PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Data filename = u'/data/%s' % (expInfo['participant'])
  Experiment info = {'participant': 'CDD'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['cdd_qp_trials.csv', 'cdd_practice2.csv', 'cdd_practice1.csv', 'cdd_gen_trials_idx.csv', 'images/2key.png', 'images/4key.png']
  Screen = 2
  Units = height
  Use version = 2023.2.2
  Window size (pixels) = [1728, 1117]
  expName = cdd_ado
  keyboardBackend = Pyglet
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Routines
  Routine cdd_instr1
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    CodeComponent cdd_instr1_JS
      Code Type = JS
      Before JS Experiment:
        var exp_proceed = true;
        var cdd_earnings = [];
        var cdd_conf_resps = [];
      Begin JS Experiment:
        //function for random.random used in python
        random = {
        random: function(){return Math.random()},
        randint: function(start, end){return Math.round(Math.random() * (end - start) + start)},
        choices: function(items, weights){
            var i;
            for (i = 0; i < weights.length; i++)
                weights[i] += weights[i - 1] || 0;
            var random = Math.random() * weights[weights.length - 1];
            for (i = 0; i < weights.length; i++)
                if (weights[i] > random)
                    break;
            return items[i] }
        }

        const formatter = new Intl.NumberFormat('en-US', {
          minimumFractionDigits: 2,
          maximumFractionDigits: 2,
        });

        format = formatter.format;
      Begin JS Routine:
        cdd_practice_loop1_name = "cdd_pract1_trials";
        cdd_questplus_loop_name = "cdd_qp_trials"
        cdd_practice_loop2_name = "cdd_pract2_trials";
        cdd_loop_name = "cdd_trials";
    CodeComponent cdd_instr1_PY
      Code Type = Py
      disabled = True
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      Before Experiment:
        import random
        exp_proceed = True
        earnings = []
        conf_resps = []
      Begin Experiment:
        subid = expInfo["participant"]

        if not os.path.exists("data/{0}".format(subid)): #does subject exist
            os.mkdir("data/{0}".format(subid))
        if not os.path.exists("data/{0}/session{1}".format(subid, expInfo["session"])): #does session exist
            os.mkdir("data/{0}/session{1}".format(subid, expInfo["session"]))

        def format(number):
            return "[0:0.2f]".format(number)
      Begin Routine:
        #provides specific loop names for each of two interations of DD
        #to provide flexibility of cdd_pract_trial and cdd_trial routines
        practice_loop_name = "cdd_pract_trials"
        loop_name = "cdd_trials"
    TextComponent cdd_instr1_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Delay Discounting Task *
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    TextComponent cdd_instr1_txt
      letterHeight = 0.03
      pos = (0, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        In this decision making task, you will be asked indicate your preference between:

        - An amount of money you could receive today
        OR
        - An amount of money you could receive in the future

        The value of each option and the length of delay will change across trials. One of your choices in this section may be randomly selected as your *bonus earnings trial* at the end of the experiment.

        Example:
        - If you chose \$25 dollars immediately, you would receive \$25 today.
        - If you chose \$50 in 15 days, you would receive \$50 in 15 days.
    TextComponent cdd_instr1_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent cdd_instr1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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
  Routine cdd_pract_instr
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    PolygonComponent cdd_pract_instr_left_poly
      fillColor = 0, 0, 0
      lineWidth = 10
      pos = (-0.5, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    PolygonComponent cdd_pract_instr_right_poly
      fillColor = 0, 0, 0
      lineWidth = 10
      pos = (0.5, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent cdd_pract_instr_txt
      letterHeight = 0.05
      pos = (0, 0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        *EXAMPLE TRIAL*

        Which would you prefer?








        Let's practice!
    TextComponent cdd_pract_instr_immed_txt
      letterHeight = 0.04
      pos = (0.5, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        \$10

        TODAY
    TextComponent cdd_pract_instr_delay_txt
      letterHeight = 0.04
      pos = (-0.5, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        \$50

        9 DAYS
    TextComponent cdd_pract_instr_or_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = OR
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    TextComponent cdd_pract_instr_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent cdd_pract_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cdd_init_fix
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    PolygonComponent cdd_init_fix_polygon
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine cdd_feedback
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    CodeComponent cdd_feedback_code
      Code Type = Both
      Begin JS Routine:
        if ((cdd_key === undefined)) {
            cdd_msg = "NO RESPONSE";
        } else {
            if (cdd_immed_key) {
                cdd_msg = "$ NOW";
            } else {
                cdd_msg = "$ LATER";
            }
        }
      Begin Routine:
        if len(cdd_key) == 0: #Ss did not respond
            cdd_msg = "NO RESPONSE"
        elif cdd_immed_key: #Ss chose smaller, immediate option
            cdd_msg = "$ NOW"
        else: #Ss chose larger, delayed option
            cdd_msg = "$ LATER"
    TextComponent cdd_feedback_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $cdd_msg
      wrapWidth = 1.25
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  Routine cdd_conf
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    CodeComponent cdd_conf_py
      Code Type = Both
      Begin JS Routine:
        if ((cdd_key === undefined)) {
            continueRoutine = false;
        }
        conf1_color = [0, 0, 0];
        conf2_color = [0, 0, 0];
        conf3_color = [0, 0, 0];
        conf4_color = [0, 0, 0];
      Begin Routine:
        #Ss did not respond to choice trial
        if len(cdd_key) == 0:
            continueRoutine = False

        #set all 4 boxes as gray by default
        conf1_color = [0, 0, 0]
        conf2_color = [0, 0, 0]
        conf3_color = [0, 0, 0]
        conf4_color = [0, 0, 0]
      Each Frame:
        cdd_conf_key = cdd_conf_resp.keys
        #confidence rating received
        if len(cdd_conf_key) == 1:
            #not at all confident
            if cdd_conf_key == "1":
                conf1_color = "darkgray"
                conf2_color = [0, 0, 0]
                conf3_color = [0, 0, 0]
                conf4_color = [0, 0, 0]
            #less confident
            elif cdd_conf_key == "2":
                conf1_color = [0, 0, 0]
                conf2_color = "darkgray"
                conf3_color = [0, 0, 0]
                conf4_color = [0, 0, 0]
            #somewhat confident
            elif cdd_conf_key == "3":
                conf1_color = [0, 0, 0]
                conf2_color = [0, 0, 0]
                conf3_color = "darkgray"
                conf4_color = [0, 0, 0]
            #very confident
            elif cdd_conf_key == "4":
                conf1_color = [0, 0, 0]
                conf2_color = [0, 0, 0]
                conf3_color = [0, 0, 0]
                conf4_color = "darkgray"
      Each JS Frame:
        cdd_conf_key = cdd_conf_resp.keys;
        if (!(cdd_conf_key === undefined) && (cdd_conf_key.length === 1)) {
            if ((cdd_conf_key === "1")) {
                conf1_color = "darkgray";
                conf2_color = [0, 0, 0];
                conf3_color = [0, 0, 0];
                conf4_color = [0, 0, 0];
            } else {
                if ((cdd_conf_key === "2")) {
                    conf1_color = [0, 0, 0];
                    conf2_color = "darkgray";
                    conf3_color = [0, 0, 0];
                    conf4_color = [0, 0, 0];
                } else {
                    if ((cdd_conf_key === "3")) {
                        conf1_color = [0, 0, 0];
                        conf2_color = [0, 0, 0];
                        conf3_color = "darkgray";
                        conf4_color = [0, 0, 0];
                    } else {
                        if ((cdd_conf_key === "4")) {
                            conf1_color = [0, 0, 0];
                            conf2_color = [0, 0, 0];
                            conf3_color = [0, 0, 0];
                            conf4_color = "darkgray";
                        }
                    }
                }
            }
        }
      End JS Routine:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        my_loop.addData("cdd_conf", cdd_conf_key);
        if (!(cdd_conf_key == undefined) && (cdd_conf_key.length === 1)) {
            if ((Array.isArray(cdd_conf_key))) {
                if (_pj.in_es6(cdd_conf_key.slice((- 1))[0], ["1", "2", "3", "4"])) {
                    cdd_conf_resps.push(cdd_conf_key);
                }
            } else {
                if (_pj.in_es6(cdd_conf_key, ["1", "2", "3", "4"])) {
                    cdd_conf_resps.push(cdd_conf_key);
                }
            }
        }
        conf1_color = [0, 0, 0];
        conf2_color = [0, 0, 0];
        conf3_color = [0, 0, 0];
        conf4_color = [0, 0, 0];

        cdd_conf1.setFillColor(new util.Color(conf1_color), false);
        cdd_conf2.setFillColor(new util.Color(conf2_color), false);
        cdd_conf3.setFillColor(new util.Color(conf3_color), false);
        cdd_conf4.setFillColor(new util.Color(conf4_color), false);
      End Routine:
        my_loop.addData("cdd_conf", cdd_conf_key)

        if len(cdd_conf_key) == 1:
            if type(cdd_conf_key) == list:
                if cdd_conf_key[-1] in ["1", "2", "3", "4"]:
                    cdd_conf_resps.append(cdd_conf_key)
            else:
                if cdd_conf_key in ["1", "2", "3", "4"]:
                    cdd_conf_resps.append(cdd_conf_key)
    TextComponent cdd_conf_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = How confident are you in your choice?
      wrapWidth = 1.25
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    PolygonComponent cdd_conf1
      fillColor [set every frame] = $conf1_color
      lineWidth = 10
      pos = (-0.6, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent cdd_conf1_txt
      letterHeight = 0.04
      pos = (-0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Not at all
        confident

        1
    PolygonComponent cdd_conf2
      fillColor [set every frame] = $conf2_color
      lineWidth = 10
      pos = (-0.2, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent cdd_conf2_txt
      letterHeight = 0.04
      pos = (-0.2, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Less
        confident

        2
    PolygonComponent cdd_conf3
      fillColor [set every frame] = $conf3_color
      lineWidth = 10
      pos = (0.2, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent cdd_conf3_txt
      letterHeight = 0.04
      pos = (0.2, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Somewhat
        confident

        3
    PolygonComponent cdd_conf4
      fillColor [set every frame] = $conf4_color
      lineWidth = 10
      pos = (0.6, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent cdd_conf4_txt
      letterHeight = 0.04
      pos = (0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Very
        confident

        4
    KeyboardComponent cdd_conf_resp
      allowedKeys = '1', '2', '3', '4'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine cdd_trial_instr
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    CodeComponent cdd_trial_instr_code
      Code Type = Both
      Begin JS Routine:
        cdd_task_resps = [];
        cdd_conf_resps = [];
        cdd_catch_trials = [];
        cdd_iti_list = function () {
            var _pj_a = [], _pj_b = util.range(100);
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var i = _pj_b[_pj_c];
                _pj_a.push(random.random());
            }
            return _pj_a;
        }
        .call(this);
        cdd_s = util.sum(cdd_iti_list);
        cdd_iti_list = function () {
            var _pj_a = [], _pj_b = cdd_iti_list;
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var i = _pj_b[_pj_c];
                _pj_a.push(((i * 100) / cdd_s));
            }
            return _pj_a;
        }
        .call(this);
      Begin Routine:
        #QC check
        cdd_task_resps = []
        cdd_conf_resps = []
        cdd_catch_trials = []

        #variable ITI list creation
        cdd_iti_list = [random.random() for i in range(100)]
        cdd_s = sum(cdd_iti_list)
        cdd_iti_list = [i*100/cdd_s for i in cdd_iti_list]
    TextComponent cdd_trial_instr_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Delay Discounting Task *
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    TextComponent cdd_trial_instr_txt
      letterHeight = 0.03
      pos = (0, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        Now that you have practiced, the actual task will begin.

        Remember to make your choice between the immediate and delayed amounts when you see the green circle. You will have 3 seconds to consider both options and 2 seconds to make your choice. After each choice, you will be given 2 seconds to rate your choice confidence.

        When a white cross appears, please focus your attention on the center of the screen.
    TextComponent cdd_trial_instr_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent cdd_trial_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cdd_trial
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    CodeComponent cdd_trial_JS
      Code Type = JS
      Begin JS Experiment:
        cdd_delta_time = 0;
        cdd_immed_pos = [];
        cdd_delay_pos = [];
        cdd_immed_resp = [];
        cdd_msg = "";
        cdd_pos = [[(- 0.5), 0], [0.5, 0]];
        cdd_resp = ["1", "2"];

        cdd_task_nonresp_ct = 0;
        cdd_conf_nonresp_ct = 0;
      Begin JS Routine:
        my_loop = eval(cdd_loop_name);
        cdd_stop_timer = null;
        cdd_stopped_time = 0;
        cdd_conf_key = [];
        cdd_idx = random.randint(0, 1);
        cdd_immed_pos = cdd_pos[cdd_idx];
        cdd_immed_resp = cdd_resp[cdd_idx];
        if ((cdd_idx === 0)) {
            cdd_delay_pos = cdd_pos[1];
        } else {
            cdd_delay_pos = cdd_pos[0];
        }


        cdd_immed_amt = cdd_trials_dict["cdd_immed_amt"][cdd_trial_idx];
        cdd_immed_wait = 0;
        cdd_delay_amt = cdd_trials_dict["cdd_delay_amt"][cdd_trial_idx];
        cdd_delay_wait = cdd_trials_dict["cdd_delay_wait"][cdd_trial_idx];
      Each JS Frame:
        if (!(cdd_trial_resp.keys === undefined) && (cdd_trial_resp.keys.length === 1)) {
            if ((cdd_stop_timer === null)) {
                cdd_stop_timer = new util.Clock();
            } else {
                cdd_stopped_time = cdd_stop_timer.getTime();
                if ((cdd_stopped_time >= 0.5)) {
                    continueRoutine = false;
                }
            }
        }
      End JS Routine:
        cdd_q.update(cdd_contrast_idx, cdd_response);
        cdd_contrast_idx = cdd_q.next_contrast(); // # find the next contrast index

        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        cdd_key = cdd_trial_resp.keys;
        cdd_immed_key = cdd_trial_resp.corr;
        my_loop.addData("cdd_trial_type", "task");
        if (_pj.in_es6(cdd_key, ["1", "2"])) {
            cdd_task_resps.push(cdd_key);
        }
        if ((((cdd_trial_resp.rt) === undefined) || (cdd_trial_resp.rt >= (2.2 - 0.5)))) {
            cdd_delta_time = 0;
        } else {
            cdd_delta_time = Math.max(0, (2 - (cdd_trial_resp.rt + cdd_stopped_time)));
        }
        if (!(cdd_key === undefined) && (cdd_key.length === 1)) {
            if ((cdd_immed_key === 1)) {
                //if ((cdd_catch_trial === 1)) {
                    //cdd_catch_trials.push(1);
                //}
                my_loop.addData("cdd_choice", 0);
                my_loop.addData("cdd_choice2", "immed");
                cdd_earnings.push(["CDD", "immed", cdd_immed_amt, cdd_immed_wait, cdd_delay_amt, cdd_delay_wait]);
            } else {
                //if ((cdd_catch_trial === 1)) {
                    //cdd_catch_trials.push(0);
                //}
                my_loop.addData("cdd_choice", 1);
                my_loop.addData("cdd_choice2", "delay");
                cdd_earnings.push(["CDD", "delay", cdd_immed_amt, cdd_immed_wait, cdd_delay_amt, cdd_delay_wait]);
            }
        }

        my_loop.addData("cdd_trial_type", "cdd_task");
        my_loop.addData("cdd_immed_amt", cdd_immed_amt);
        my_loop.addData("cdd_delay_amt", cdd_delay_amt);
        my_loop.addData("cdd_delay_wait", cdd_delay_wait);
    CodeComponent cdd_trial_code
      Code Type = Both
      disabled = True
      Begin Experiment:
        cdd_delta_time = 0

        cdd_immed_pos = [] #position of immediate reward option
        cdd_immed_resp = [] #button for immediate reward option
        cdd_msg = ""
        cdd_pos = [[-0.5, 0], [0.5, 0]] #left/right screen positions
        cdd_resp = ["1", "2"] #1 = left, 2 = right

        cdd_task_nonresp_ct = 0
        cdd_conf_nonresp_ct = 0
      Begin JS Experiment:
        cdd_delta_time = 0;
        cdd_immed_pos = [];
        cdd_immed_resp = [];
        cdd_msg = "";
        cdd_pos = [[(- 0.5), 0], [0.5, 0]];
        cdd_resp = ["1", "2"];

        cdd_task_nonresp_ct = 0;
        cdd_conf_nonresp_ct = 0;
      Begin JS Routine:
        my_loop = eval(cdd_loop_name);
        cdd_stop_timer = null;
        cdd_stopped_time = 0;
        cdd_conf_key = [];
        cdd_idx = random.randint(0, 1);
        cdd_immed_pos = cdd_pos[cdd_idx];
        cdd_immed_resp = cdd_resp[cdd_idx];
        if ((cdd_idx === 0)) {
            cdd_delay_pos = cdd_pos[1];
        } else {
            cdd_delay_pos = cdd_pos[0];
        }
      Begin Routine:
        my_loop = eval(cdd_loop_name)
        cdd_stop_timer = None
        cdd_stopped_time = 0
        cdd_conf_key = []

        cdd_idx = random.randint(0,1) #random integer to determine side of immediate option
        cdd_immed_pos = cdd_pos[cdd_idx]
        cdd_immed_resp = cdd_resp[cdd_idx]

        #immed position is left, delay is right
        if cdd_idx == 0:
            cdd_delay_pos = cdd_pos[1]
        else:
            cdd_delay_pos = cdd_pos[0]
      Each Frame:
        #Ss responded
        if len(cdd_trial_resp.keys) == 1:
            if cdd_stop_timer == None:
                cdd_stop_timer = core.Clock()
            else:
                cdd_stopped_time = cdd_stop_timer.getTime()
                if cdd_stopped_time >= 0.5:
                    continueRoutine = False
      Each JS Frame:
        if (!(cdd_trial_resp.keys === undefined) && (cdd_trial_resp.keys.length === 1)) {
            if ((cdd_stop_timer === null)) {
                cdd_stop_timer = new util.Clock();
            } else {
                cdd_stopped_time = cdd_stop_timer.getTime();
                if ((cdd_stopped_time >= 0.5)) {
                    continueRoutine = false;
                }
            }
        }
      End JS Routine:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        cdd_key = cdd_trial_resp.keys;
        cdd_immed_key = cdd_trial_resp.corr;
        my_loop.addData("cdd_trial_type", "task");
        if (_pj.in_es6(cdd_key, ["1", "2"])) {
            cdd_task_resps.push(cdd_key);
        }
        if ((((cdd_trial_resp.rt) === undefined) || (cdd_trial_resp.rt >= (2.2 - 0.5)))) {
            cdd_delta_time = 0;
        } else {
            cdd_delta_time = Math.max(0, (2 - (cdd_trial_resp.rt + cdd_stopped_time)));
        }
        if (!(cdd_key === undefined) && (cdd_key.length === 1)) {
            if ((cdd_immed_key === 1)) {
                if ((cdd_catch_trial === 1)) {
                    cdd_catch_trials.push(1);
                }
                my_loop.addData("cdd_choice", 0);
                my_loop.addData("cdd_choice2", "immed");
                cdd_earnings.push(["CDD", "immed", cdd_immed_amt, cdd_immed_wait, cdd_delay_amt, cdd_delay_wait]);
            } else {
                if ((cdd_catch_trial === 1)) {
                    cdd_catch_trials.push(0);
                }
                my_loop.addData("cdd_choice", 1);
                my_loop.addData("cdd_choice2", "delay");
                cdd_earnings.push(["CDD", "delay", cdd_immed_amt, cdd_immed_wait, cdd_delay_amt, cdd_delay_wait]);
            }
        }
      End Routine:
        cdd_key = cdd_trial_resp.keys #Ss response key
        cdd_immed_key = cdd_trial_resp.corr #1 if immed option chosen
        my_loop.addData("cdd_trial_type", "task")
        if cdd_key in ["1", "2"]:
            cdd_task_resps.append(cdd_key)

        if type(cdd_trial_resp.rt) is list or cdd_trial_resp.rt >= 2 - 0.5:
            cdd_delta_time = 0
        else: #Ss responded and not near end of resp window
            cdd_delta_time = max(0, 2 - (cdd_trial_resp.rt + cdd_stopped_time))

        if len(cdd_key) == 1: #Ss responded
            if cdd_immed_key == 1: #Ss chose immed
                my_loop.addData("cdd_choice", 0)
                my_loop.addData("cdd_choice2", "immed")
                cdd_earnings.append(("CDD", "immed", cdd_immed_amt, cdd_immed_wait, cdd_delay_amt, cdd_delay_wait))
            else: #Ss chose delay
                my_loop.addData("cdd_choice", 1)
                my_loop.addData("cdd_choice2", "delay")
                cdd_earnings.append(("CDD", "delay", cdd_immed_amt, cdd_immed_wait, cdd_delay_amt, cdd_delay_wait))
    PolygonComponent cdd_trial_left_poly
      fillColor = 0,0,0
      lineWidth = 10
      pos = (-0.5, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent cdd_trial_right_poly
      fillColor = 0,0,0
      lineWidth = 10
      pos = (0.5, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent cdd_trial_prompt_txt
      letterHeight = 0.06
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Which would you prefer?
      wrapWidth = 1.25
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    TextComponent cdd_trial_immed_txt
      letterHeight = 0.04
      pos [set every repeat] = cdd_immed_pos
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $str("$"+str(format(cdd_immed_amt))) + "\n" + "\n" + " TODAY"
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    TextComponent cdd_trial_or_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = OR
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    TextComponent cdd_trial_delay_txt
      letterHeight = 0.04
      pos [set every repeat] = cdd_delay_pos
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $str("$"+str(format(cdd_delay_amt))) + "\n" + "\n" + str(cdd_delay_wait) + " DAYS"
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    PolygonComponent GRFX_fix4
      fillColor = [0,0,0]
      lineColor = [0,0,0]
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 2
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    PolygonComponent cdd_trial_cue
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, 1.0000, -1.0000
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 2
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    KeyboardComponent cdd_trial_resp
      allowedKeys = '1', '2'
      correctAns = $cdd_immed_resp
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine cdd_end
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    CodeComponent cdd_end_code
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        cdd_task_end_text = ""
        cdd_space_text = ""
      Begin Routine:
        cdd_unique_resps = []
        cdd_unique_count = 0
        for i in cdd_task_resps:
            if i not in cdd_unique_resps:
                cdd_unique_count += 1
                cdd_unique_resps.append(i)

        cdd_task_end_text = ""
        cdd_space_text = ""
        #filter for nonresponses
        if len(cdd_task_resps) < 95 or len(cdd_conf_resps) < 95: #95% of 96 CDD trials
            if len(cdd_task_resps) < 95:
                cdd_task_end_text = "You failed to respond to " + str(100-len(cdd_task_resps)) + " task trials and did not meet the 95% response rate requirement. \n \n The IDM Study will now close and you will not be eligible to receive payment or a bonus."
            if len(cdd_conf_resps) < 95:
                cdd_task_end_text = "You failed to respond to both parts of " + str(100-len(cdd_conf_resps)) + " trials and did not meet the 95% response rate requirement. \n \n The IDM Study will now close and you will not be eligible to receive payment or a bonus."
            cdd_space_text = "Press SPACE to end."
            exp_proceed = False
            my_loop.addData("cdd_subReject1", "< 95% resp rate")
            my_loop.addData("cdd_subReject1_nonresps", 100-len(cdd_task_resps))
        #filter for single-button responses
        elif unique_count < 2: #same for each exp
            cdd_task_end_text = "You provided the same response to all " + str(len(cdd_task_resps)) + " trials. \n \n You did not follow task instructions. \n \n The IDM Study will now close and you will not be eligible to receive payment or a bonus."
            cdd_space_text = "Press SPACE to end."
            exp_proceed = False
            my_loop.addData("cdd_subReject2", "1key response")
            my_loop.addData("cdd_subReject2_key", cdd_task_resps[0])
        #filter for poor performance on CDD catch trials (5/6 catch trials -- 3.125% of random success on 5 trials)
        #elif sum(cdd_catch_trials) < 5:
        #    cdd_task_end_text = "Your performance on the previous trial block demonstrates you did not follow task instructions. \n \n The IDM Study will now close and you will not be eligible to receive payment or a bonus."
        #    cdd_space_text = "Press SPACE to end."
        #    exp_proceed = False
        #    my_loop.addData("cdd_subReject3", "catch fail")
        #    my_loop.addData("cdd_subReject3_fails", 6-sum(cdd_catch_trials))
        #all CDD task trial criterion are met
        else:
            cdd_task_end_text = "You have completed the Delay Discounting Task!"
            cdd_space_text = "Press SPACE to continue."
    TextComponent cdd_end_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Delay Discounting Task *
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    TextComponent cdd_end_txt_ON
      disabled = True
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $cdd_task_end_text
      wrapWidth = 1.35
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    TextComponent cdd_end_space_ON
      disabled = True
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $cdd_space_text
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    TextComponent cdd_end_txt_OFF
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = You have completed the Delay Discounting Task!
      wrapWidth = 1.35
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    TextComponent cdd_end_space_OFF
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent cdd_end_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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
  Routine cdd_bonus
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    CodeComponent cdd_bonus_code
      Code Type = JS
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      Begin JS Routine:
        exp = [];
        choice = [];
        choice_amt = [];
        choice_wait = [];
        other_amt = [];
        other_wait = [];
        choice_text = "";
        other_text = "";
        idx = Number.parseInt((random.random() * cdd_earnings.length));
        if ((cdd_earnings[idx][1] === "immed")) {
            [exp, choice, choice_amt, choice_wait, other_amt, other_wait] = cdd_earnings[idx];
            choice_text = (("$" + format(choice_amt).toString()) + " TODAY");
            other_text = (((("$" + format(other_amt).toString()) + " in ") + other_wait.toString()) + " DAYS");
            my_loop.addData("cdd_bonus_choice", choice);
            my_loop.addData("cdd_bonus_amt", choice_amt);
            my_loop.addData("cdd_bonus_delay", choice_wait);
        } else {
            [exp, choice, other_amt, other_wait, choice_amt, choice_wait] = cdd_earnings[idx];
            choice_text = (((("$" + format(choice_amt).toString()) + " in ") + choice_wait.toString()) + " DAYS");
            other_text = (("$" + format(other_amt).toString()) + " TODAY");
            my_loop.addData("cdd_bonus_choice", choice);
            my_loop.addData("cdd_bonus_amt", choice_amt);
            my_loop.addData("cdd_bonus_delay", choice_wait);
        }
    TextComponent cdd_bonus_thanks_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.35
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      text:
        Your randomly selected *bonus earnings trial* is from the
        Delay Discounting Task!
    TextComponent cdd_bonus_box
      letterHeight = 0.04
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = In this trial, you chose to receive:
      wrapWidth = 1.25
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    TextComponent cdd_bonus_choice_txt
      color = -1.0000, 0.0039, -1.0000
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $choice_text
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    TextComponent cdd_bonus_rather_txt
      letterHeight = 0.04
      pos = (0, -0.125)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = rather than
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    TextComponent cdd_bonus_other_txt
      color = 0.9608, 0.0039, -0.1059
      letterHeight = 0.055
      pos = (0, -0.225)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $other_text
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    TextComponent cdd_bonus_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to end task
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    KeyboardComponent cdd_bonus_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cdd_trial_iti
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    CodeComponent cdd_trial_iti_code
      Code Type = Both
      Begin JS Routine:
        cdd_iti_time = (cdd_iti_list[my_loop.thisIndex] + cdd_delta_time);
        if (!(cdd_trials.thisTrialN == undefined) && (cdd_trials.thisTrialN === 99)) {
            continueRoutine = false;
        }
      Begin Routine:
        cdd_iti_time = cdd_iti_list[my_loop.thisIndex] + cdd_delta_time #variable ITI for non-practice trials
        #96 trials in CDD task
        if cdd_trials.thisTrialN == 99: #after the final task trial
            continueRoutine = False #do not show ITI fixation
      End JS Routine:
        my_loop.addData("cdd_delta_time", cdd_delta_time);
        my_loop.addData("cdd_iti_time", cdd_iti_time);
      End Routine:
        my_loop.addData("cdd_delta_time", cdd_delta_time) #record current trial delta time in output
        my_loop.addData("cdd_iti_time", cdd_iti_time) #record current trial ITI time in output
    PolygonComponent cdd_trial_iti_poly
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 1.0000, 1.0000, 1.0000
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $cdd_iti_time
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
  Routine cdd_instr2
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    TextComponent cdd_instr2_txt
      letterHeight = 0.04
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        Please read each option carefully. When the green circle appears, use the number keys at the top of your keyboard to indicate your choice:

        Press 1 to select the left option
        Press 2 to select the right option
    ImageComponent cdd_instr2_img
      image = images/2key.png
      pos = (0, -0.1)
      saveStartStop = False
      size = (0.6, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent cdd_instr2_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent cdd_instr2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cdd_instr3
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    TextComponent cdd_instr3_txt
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.35
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      text:
        After each choice, you will be asked to rate your choice confidence.
        1 indicates you couldn't decide which option you preferred and chose at random, while 4 indicates total certainty in your choice. Use the number keys at the top of your keyboard to indicate your confidence:

        Press 1 - Not at all confident
        Press 2 - Less confident
        Press 3 - Somewhat confident
        Press 4 - Very confident
    ImageComponent cdd_instr3_img
      image = images/4key.png
      pos = (0, -0.15)
      saveStartStop = False
      size = (0.6, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent cdd_instr3_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent cdd_instr3_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cdd_pract1_trial
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    CodeComponent cdd_pract1_trial_code
      Code Type = JS
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      Begin JS Experiment:
        cdd_immed_pos1 = [];
        cdd_delay_pos1 = [];
        cdd_immed_resp1 = [];
        cdd_msg1 = "";
        cdd_pos1 = [[(- 0.5), 0], [0.5, 0]];
        cdd_resp1 = ["1", "2"];
      Begin JS Routine:
        my_loop = eval(cdd_practice_loop1_name);
        cdd_idx1 = random.randint(0, 1);
        cdd_immed_pos1 = cdd_pos1[cdd_idx1];
        cdd_immed_resp1 = cdd_resp1[cdd_idx1];

        if ((cdd_idx1 === 0)) {
            cdd_delay_pos1 = cdd_pos1[1];
        } else {
            cdd_delay_pos1 = cdd_pos1[0];
        }
      End JS Routine:
        cdd_pract1_key = cdd_pract1_trial_resp.keys;
        cdd_pract1_immed_key = cdd_pract1_trial_resp.corr;
        my_loop.addData("cdd_trial_type", "practice1");
    PolygonComponent cdd_pract1_trial_left_poly
      fillColor = 0,0,0
      lineWidth = 10
      pos = (-0.5, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent cdd_pract1_trial_right_poly
      fillColor = 0,0,0
      lineWidth = 10
      pos = (0.5, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent cdd_pract1_trial_prompt_txt
      letterHeight = 0.06
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Which would you prefer?
      wrapWidth = 1.25
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    TextComponent cdd_pract1_trial_immed_txt
      letterHeight = 0.04
      pos [set every repeat] = cdd_immed_pos1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $str("$"+str(format(cdd_immed_amt1))) + "\n" + "\n" + " TODAY"
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    TextComponent cdd_pract1_trial_or_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = OR
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    TextComponent cdd_pract1_trial_delay_txt
      letterHeight = 0.04
      pos [set every repeat] = cdd_delay_pos1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $str("$"+str(format(cdd_delay_amt1))) + "\n" + "\n" + str(cdd_delay_wait1) + " DAYS"
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    PolygonComponent GRFX_fix1
      fillColor = [0,0,0]
      lineColor = [0,0,0]
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 2
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    PolygonComponent cdd_pract1_trial_cue
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, 1.0000, -1.0000
      saveStartStop = False
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 2
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    KeyboardComponent cdd_pract1_trial_resp
      allowedKeys = '1', '2'
      correctAns = $cdd_immed_resp1
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine cdd_pract1_feedback
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    CodeComponent cdd_pract1_feedback_py
      Code Type = Both
      Begin JS Routine:
        if ((cdd_pract1_key === undefined)) {
            cdd_msg1 = "NO RESPONSE";
        } else {
            if (cdd_pract1_immed_key) {
                cdd_msg1 = "$ NOW";
            } else {
                cdd_msg1 = "$ LATER";
            }
        }
      Begin Routine:
        if len(cdd_pract1_key) == 0: #Ss did not respond
            cdd_msg1 = "NO RESPONSE"
        elif cdd_pract1_immed_key: #Ss chose smaller, immediate option
            cdd_msg1 = "$ NOW"
        else: #Ss chose larger, delayed option
            cdd_msg1 = "$ LATER"
    TextComponent cdd_pract1_feedback_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $cdd_msg1
      wrapWidth = 1.25
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  Routine cdd_qp_instr
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    TextComponent crdm_qp_instr_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Delayed Discounting Task *
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    TextComponent crdm_qp_instr_txt
      letterHeight = 0.04
      pos = (0, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        Now that you've practiced, we'll begin the first section of the task.

        You will have 3 seconds to consider and 2 seconds to respond for each trial. Please make your choice when the green circle appears on the screen.
    TextComponent crdm_qp_instr_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to begin.
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    KeyboardComponent crdm_qp_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cdd_questplus
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    CodeComponent cdd_questplus_JS
      Code Type = JS
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      Begin JS Experiment:
        cdd_immed_pos_qp = [];
        cdd_delay_pos_qp = [];
        cdd_immed_resp_qp = [];
        cdd_msg_qp = "";
        cdd_pos_qp = [[(- 0.5), 0], [0.5, 0]];
        cdd_resp_qp = ["1", "2"];

        arange_round = function(start,end,step=null) {
                    if (step === null)
                        step = 1;
                    var arr = [];
                    if (end > start) {
                        for (var i=start; Math.round(i*10)/10 < end; i+=step) {
                            arr.push(Math.round(i*10)/10);
                        }
                    } else {
                        for (var i=start; Math.round(i*10)/10 > end; i+=step) {
                            arr.push(Math.round(i*10)/10);
                        }
                    }
                    return arr;
                }

        weighted_avg = function(q) {
            var fits = [];
            var weight = 0;
            // q.param_domain, q.posterior
            var i, l;
            l = q.param_domain[0].length;
            while (fits.length < l) {
                fits.push(0);
            }
            for (i = 0; i < q.posterior.length; i++) {
                for (l = 0; l < fits.length; l++) {
                    fits[l] += q.param_domain[i][l] * q.posterior[i];
                }
                weight += q.posterior[i];
            }
            for (l = 0; l < fits.length; l++) {
                fits[l] /= weight;
            }
            return fits;
        }

        // Sqrt(sum(w * (x - wm)^2) / sum(w))
        weighted_sd = function(q) {
            var fits = [];
            var weight = 0;
            var i, l;
            var wm = weighted_avg(q);
            l = q.param_domain[0].length;
            while (fits.length < l) {
                fits.push(0);
            }
            for (i = 0; i < q.posterior.length; i++) {
                for (l = 0; l < fits.length; l++) {
                    fits[l] += q.posterior[i] * Math.pow((q.param_domain[i][l] - wm[l]), 2);
                }
                weight += q.posterior[i];
            }
            for (l = 0; l < fits.length; l++) {
                fits[l] /= weight;
                fits[l] = Math.sqrt(fits[l])
            }
            return fits;
        }

        // delayed discounting
        SV_DD = function(stimulus_values, params) {
            var objective_value = stimulus_values[0];
            var delay_days = stimulus_values[1];
            var value_immed = stimulus_values[2];

            var alpha = params[0]; //#Ss risk aversion parameter
            var kappa = params[1]; //#discount_rate parameter
            var gamma = params[2]; //#curvature shape for decision boundary

            var sv_delay = Math.pow(objective_value, alpha)/(1+kappa*delay_days);
            var sv_immed = Math.pow(value_immed, alpha);
            var prob = 1./(1 + Math.exp(-gamma*(sv_delay-sv_immed)));
            return prob;
        }

        // gains value space
        cdd_value_space = [7, 14, 21, 30, 41, 50, 65];
        cdd_time_reward_space = [5, 10, 30, 60, 90, 150];
        cdd_value_fixed = 10;
        cdd_alpha_space = arange_round(0.0, 3.1, 0.1); //# participant parameter space
        // discount rate
        cdd_kappa_space = [1e-05, 1.2648552168552958e-05, 1.5998587196060572e-05, 2.0235896477251556e-05, 2.559547922699533e-05, 3.237457542817647e-05, 4.094915062380427e-05, 5.1794746792312125e-05, 6.55128556859551e-05, 8.286427728546843e-05, 0.00010481131341546853, 0.00013257113655901095, 0.00016768329368110083, 0.00021209508879201905, 0.0002682695795279727, 0.000339322177189533, 0.00042919342601287783, 0.0005428675439323859, 0.0006866488450042998, 0.000868511373751353, 0.0010985411419875584, 0.0013894954943731374, 0.001757510624854793, 0.0022229964825261957, 0.002811768697974231, 0.0035564803062231283, 0.004498432668969444, 0.005689866029018299, 0.0071968567300115215, 0.009102981779915217, 0.011513953993264481, 0.014563484775012445, 0.018420699693267165, 0.023299518105153717, 0.029470517025518096, 0.037275937203149416, 0.04714866363457394, 0.05963623316594643, 0.07543120063354623, 0.09540954763499944, 0.1206792640639329, 0.15264179671752334, 0.19306977288832497, 0.244205309454865, 0.30888435964774846, 0.3906939937054621, 0.49417133613238384, 0.6250551925273976, 0.7906043210907702, 1.0];
        cdd_gamma_space =  arange_round(0.5, 5.1, 0.5);
        cdd_stim_space = [];
        cdd_i = 0;
        cdd_j = 0;
        for (cdd_i = 0; cdd_i < cdd_value_space.length; cdd_i++) {
            for (cdd_j = 0; cdd_j < cdd_time_reward_space.length; cdd_j++) {
                cdd_stim_space.push([cdd_value_space[cdd_i], cdd_time_reward_space[cdd_j], cdd_value_fixed]);
            }
        }

        // subjective value decision?
        draw_from = function(stimulus_value, params, func){
            var prob = func(stimulus_value, params);
            if (Math.random() < prob)
                return 1;
            else
                return 0;
        }

        cdd_params = [cdd_alpha_space, cdd_kappa_space, cdd_gamma_space];
        cdd_func = SV_DD;
        cdd_contrast_idx;
        cdd_response = true;
        cdd_contrast_idx = parseInt(Math.random() * cdd_stim_space.length);//parseInt(stim_space.length/2);
        cdd_q = new QuestPlus(cdd_stim_space, cdd_params, cdd_func);
      Begin JS Routine:
        my_loop = eval(cdd_questplus_loop_name);
        cdd_idx_qp = random.randint(0, 1);
        cdd_immed_pos_qp = cdd_pos_qp[cdd_idx_qp];
        cdd_immed_resp_qp = cdd_resp_qp[cdd_idx_qp];

        if ((cdd_idx_qp === 0)) {
            cdd_delay_pos_qp = cdd_pos_qp[1];
        } else {
            cdd_delay_pos_qp = cdd_pos_qp[0];
        }

        packed_qp_trial = cdd_stim_space[cdd_contrast_idx];
        cdd_delay_amt_qp = packed_qp_trial[0];
        cdd_delay_wait_qp = packed_qp_trial[1];
        cdd_immed_amt_qp = packed_qp_trial[2];
      End JS Routine:
        cdd_qp_key = cdd_questplus_trial_resp.keys;
        cdd_qp_immed_key = cdd_questplus_trial_resp.corr;
        my_loop.addData("cdd_trial_type", "questplus");

        cdd_response = !cdd_qp_immed_key;
        cdd_q.update(cdd_contrast_idx, cdd_response); //# update posterior
        cdd_contrast_idx = cdd_q.next_contrast(); //# find next contrast index
        cdd_post_mean = weighted_avg(cdd_q);
        cdd_post_sd = weighted_sd(cdd_q);

        my_loop.addData("cdd_trial_type", "questplus");
        my_loop.addData("cdd_response", cdd_response);
        my_loop.addData("cdd_mean_alpha", cdd_post_mean[0]);
        my_loop.addData("cdd_mean_kappa", cdd_post_mean[1]);
        my_loop.addData("cdd_mean_gamma", cdd_post_mean[2]);
        my_loop.addData("cdd_sd_alpha", cdd_post_sd[0]);
        my_loop.addData("cdd_sd_kappa", cdd_post_sd[1]);
        my_loop.addData("cdd_sd_gamma", cdd_post_sd[2]);
        my_loop.addData("cdd_immed_amt_qp", cdd_immed_amt_qp);
        my_loop.addData("cdd_delay_amt_qp", cdd_delay_amt_qp);
        my_loop.addData("cdd_delay_wait_qp", cdd_delay_wait_qp);
    CodeComponent cdd_questplus_trial_code
      Code Type = Both
      disabled = True
      Begin Experiment:
        cdd_immed_pos_qp = [] #position of immediate amt option
        cdd_immed_resp_qp = [] #which key is immediate amt option
        cdd_msg_qp = ""

        #stimuli positions and respective responses
        cdd_pos_qp = [[-0.5, 0], [0.5, 0]] #left/right screen locations
        cdd_resp_qp = ["1", "2"] #1 = left, 2 = right
      Begin JS Experiment:
        cdd_immed_pos_qp = [];
        cdd_immed_resp_qp = [];
        cdd_msg_qp = "";
        cdd_pos_qp = [[(- 0.5), 0], [0.5, 0]];
        cdd_resp_qp = ["1", "2"];
      Begin JS Routine:
        my_loop = eval(cdd_practice_loop_name);
        cdd_idx_qp = random.randint(0, 1);
        cdd_immed_pos_qp = cdd_pos_qp[cdd_idx_qp];
        cdd_immed_resp_qp = cdd_resp_qp[cdd_idx_qp];
      Begin Routine:
        my_loop = eval(cdd_practice_loop_name)
        cdd_idx_qp = random.randint(0,1) #random selection of position and resp key
        cdd_immed_pos_qp = cdd_pos_qp[cdd_idx_qp]
        cdd_immed_resp_qp = cdd_resp_qp[cdd_idx_qp]
      End JS Routine:
        cdd_qp_key = cdd_questplus_trial_resp.keys;
        cdd_qp_immed_key = cdd_questplus_trial_resp.corr;
        my_loop.addData("cdd_trial_type", "questplus");
      End Routine:
        cdd_qp_key = cdd_questplus_trial_resp.keys #Ss response key
        cdd_qp_immed_key = cdd_questplus_trial_resp.corr #1 when immediate amt is chosen
        my_loop.addData("cdd_trial_type", "questplus")
    PolygonComponent cdd_questplus_trial_left_poly
      fillColor = 0,0,0
      lineWidth = 10
      pos = (-0.5, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent cdd_questplus_trial_right_poly
      fillColor = 0,0,0
      lineWidth = 10
      pos = (0.5, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent cdd_questplus_trial_prompt_txt
      letterHeight = 0.06
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Which would you prefer?
      wrapWidth = 1.25
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    TextComponent cdd_questplus_trial_immed_txt
      letterHeight = 0.04
      pos [set every repeat] = cdd_immed_pos_qp
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $str("$"+str(format(cdd_immed_amt_qp))) + "\n" + "\n" + " TODAY"
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    TextComponent cdd_questplus_trial_or_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = OR
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    TextComponent cdd_questplus_trial_delay_txt
      letterHeight = 0.04
      pos [set every repeat] = cdd_delay_pos_qp
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $str("$"+str(format(cdd_delay_amt_qp))) + "\n" + "\n" + str(cdd_delay_wait_qp) + " DAYS"
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    PolygonComponent GRFX_fix2
      fillColor = [0,0,0]
      lineColor = [0,0,0]
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 2
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    PolygonComponent cdd_questplus_trial_cue
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, 1.0000, -1.0000
      saveStartStop = False
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 2
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    KeyboardComponent cdd_questplus_trial_resp
      allowedKeys = '1', '2'
      correctAns = $cdd_immed_resp_qp
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine cdd_questplus_fb
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    CodeComponent cdd_questplus_fb_code
      Code Type = Both
      Begin JS Routine:
        if ((cdd_qp_key === undefined)) {
            cdd_msg_qp = "NO RESPONSE";
        } else {
            if (cdd_qp_immed_key) {
                cdd_msg_qp = "$ NOW";
            } else {
                cdd_msg_qp = "$ LATER";
            }
        }
      Begin Routine:
        if len(cdd_qp_key) == 0: #Ss did not respond
            cdd_msg_qp = "NO RESPONSE"
        elif cdd_qp_immed_key: #Ss chose smaller, immediate option
            cdd_msg_qp = "$ NOW"
        else: #Ss chose larger, delayed option
            cdd_msg_qp = "$ LATER"
    TextComponent cdd_qp_fb_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $cdd_msg_qp
      wrapWidth = 1.25
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  Routine cdd_schedule_gen
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    CodeComponent cdd_schedule_gen_JS
      Code Type = JS
      Begin JS Experiment:
        //# because Pavlovia doesn't auto-convert append or extend to push,
        //#  make the same functions work for any javascript array by affecting the prototype
        Array.prototype.append = Array.prototype.push
        Array.prototype.extend = function(arr){this.push(...arr)};

        //# avoid using the "function name(){}" syntax
        //#  to account for Pavlovia's scope problems.

        range = function(start_stop, post_stop, step=1) {
            //# create a list sequence with a starting point, stopping point, and step size
            //#  the step size is assumed 1 if not provided
            //#  the first value is considered the stopping point if the second value is not given,
            //#   in which case the starting point is assumed to be 0.
            //#  post_stop is the non-inclusive end point.
            var arr = [];
            if (post_stop != undefined) {
                for (var i = start_stop; i < post_stop; i += step) {
                    arr.push(i);
                }
            } else {
                for (var i = 0; i < start_stop; i += step) {
                    arr.push(i);
                }
            }
            return arr;
        }

        arange = function(start_stop, post_stop, step=1, rounding=2) {
            //# same as range(), but with rounding built-in
            //# create a list sequence with a starting point, stopping point, and step size
            //#  the step size is assumed 1 if not provided
            //#  the first value is considered the stopping point if the second value is not given,
            //#   in which case the starting point is assumed to be 0.
            //#  post_stop is the non-inclusive end point.
            var arr = [];
            if (post_stop != undefined) {
                if (post_stop < start_stop) {
                    for (var i = start_stop; i > post_stop; i += step) {
                        arr.push(round(i, rounding))
                    }
                } else {
                    for (var i = start_stop; i < post_stop; i += step) {
                        arr.push(round(i, rounding))
                    }
                }
            } else {
                if (start_stop < 0) {
                    for (var i = 0; i > start_stop; i += step) {
                        arr.push(round(i, rounding))
                    }
                } else {
                    for (var i = 0; i < start_stop; i += step) {
                        arr.push(round(i, rounding))
                    }
                }
            }
            return arr;
        }

        clone = function(arr) {
            //# recursive function to deep copy arrays and dictionaries
            var loops, tmp;
            //# see if it is an array
            //#  check a couple of things to try to avoid objects with these keys
            if (Array.isArray(arr)) {
                loops = arr;
                tmp = [];
            } else {
                loops = Object.keys(arr);
                tmp = {};
            }
            loops.forEach(function(val) {
                var value;
                //# if the looped items are the array, push() to a list
                if (loops === arr) {
                    value = val;
                    if (typeof(value) == "object") {
                        //# if the subelement is another complex object,
                        //#  then clone it as well.
                        tmp.push(clone(value));
                    } else {
                        tmp.push(value);
                    }
                } else { //# if the looped items are the dictionary
                         //#  add them with the key
                    value = arr[val];
                    if (typeof(value) == "object") {
                        //# if the subelement is another complex object,
                        //#  then clone it as well.
                        tmp[val] = clone(value);
                    } else {
                        tmp[val] = value;
                    }
                }
            })
            return tmp;
        }

        sum = function(arr){return arr.reduce((partialSum, a) => partialSum + a, 0)}


        random = {
            //# contains useful random number generation functions
            "random" : function(start_stop=1, post_stop=undefined, count=1) {
                var results = [];
                range(count).forEach(function() {
                    if (post_stop != undefined) {
                        if (post_stop < start_stop) {
                            var tmp = post_stop;
                            post_stop = start_stop;
                            start_stop = tmp;
                        }
                        results.push((start_stop + Math.random() * (post_stop - start_stop)));
                    } else {
                        //# if post_stop is not defined, start_stop is the non-inclusive max value.
                        results.push((Math.random() * start_stop));
                    }
                });
                if (count == 1)
                    return results[0];
                    return results;
            },

            "randint" : function(start_stop, post_stop, count=1) {
                var results = [];
                range(count).forEach(function() {
                    //# Math.random() never gives exactly 1, so it
                    //#  never reaches the provided max value.
                    if (post_stop != undefined) {
                        if (post_stop < start_stop) {
                            var tmp = post_stop;
                            post_stop = start_stop;
                            start_stop = tmp;
                        }
                        results.push(parseInt(start_stop + Math.random() * (post_stop - start_stop)));
                    } else {
                        //# if post_stop is not defined, start_stop is non-inclusive max value
                        results.push(parseInt(Math.random() * start_stop));
                    }
                });
                if (count == 1)
                    return results[0];
                    return results;
            },

            "choice" : function(arr, count=1, with_replacement=true) {
                var results = [];
                if (with_replacement) {
                    range(count).forEach(function() {
                        results.push(arr[random.randint(arr.length)]);
                    });
                } else {
                    //# make shallow copy to choose from.
                    //#  you can always clone returned result if you want unique copies,
                    //#  and it makes no difference for arrays of primitives
                    //#  (like numeric indices or string keys).
                    var tmp = [...arr];
                    range(count).forEach(function() {
                        if (tmp.length == 0)
                            //# refill array
                            tmp = [...arr];
                            results.push(tmp.splice(random.randint(tmp.length), 1));
                    });
                }
                if (count == 1)
                    return results[0];
                    return results;
            }
        }
      Begin JS Routine:
        var valence;
        kappa_value = cdd_post_mean[1];
        //kappa_value = 0.05;

        amt_immed_options = [2.0, 5.0, 10.0, 15.0, 18.0, 20.0, 27.0, 30.0, 34.0,
                             35.0, 41.0, 43.0, 44.0, 47.0, 51.0, 62.0, 63.0, 64.0]; // possible immediate $ options
        amt_del_options = [5.0, 10.0, 20.0, 35.0, 50.0, 65.0]; // possible delay $ options

        V_max= 65.0; // maximum pay
        V_min = 2.0; // minimum pay
        max_time = 180; // longest delay
        min_time = 2; // shortest delay

        // parameter to modulate how many intermediate trials we want
        Amp = 1/5.0; // fraction of SVmax to match final time option
        if (kappa_value < 0.003) {
            Amp = 1/4.0;
        }

        // calculate time options
        num_steps = 5; // number of delay options

        // longest possible delay to sample from to equally sample SVdelta pos and neg
        d0 = (1/Amp - 1) / kappa_value;
        if (d0 > max_time) {
            d0 = max_time; // ensure 180 days is max limit for peopke with low kappa_value
        }

        // initialize time_options_1 list with time options we always want
        time_options_1 = [7, 15]

        if (d0 < max_time) {
            num_steps = 3;
            time_options_1.push(...[round(d0 + ((max_time - d0)/2)), max_time]); // ensure longest delays are always included for participant's with high kappa
        }

        // loop through number of time_options (num_steps)
        l = arange_round(0, num_steps+1, 1);
        var i
        for (i = 0; i < l.length; i++) {
            if (i > 0){
                time_options_1.push(round(i * (d0 / num_steps)));
            } else {
                time_options_1.push(min_time);
                }
        }

        time_options = [];
        time_options.push(...time_options_1);

        amt_immed_options = amt_immed_options.sort((a, b) => a < b);
        amt_del_options = amt_del_options.sort((a, b) => a < b);
        time_options = time_options.sort((a, b) => a < b);


        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);


        keys_order = ["category", "cdd_immed_amt", "cdd_delay_amt", "cdd_delay_wait", "delay_SV", "deltaSV"];
        order_keys = function(dict, keys_order) {
            var ordered_dict;
            ordered_dict = {};
            for (var key, _pj_c = 0, _pj_a = keys_order, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                key = _pj_a[_pj_c];
                if (_pj.in_es6(key, dict)) {
                    ordered_dict[key] = dict[key];
                }
            }
            return ordered_dict;
        }


        flatten = function(list) {
            //#flatten list of lists
            return list.flatten();
        }


        round_to_closest_half = function(number) {
            var rounded_number;
            rounded_number = (Math.round((number * 2))/2);
            return ((rounded_number === 0) ? 0.5 : rounded_number);
        }


        zippy = function(x, y) {
            var zipper;
            zipper = [];
            for (var i = 0, _pj_a = x.length; (i < _pj_a); i += 1) {
                zipper.push({"x": x[i], "y": y[i]});
            }
            return zipper;
        }


        mighty_numeration = function(iterable, start = 0) {
            var n;
            n = start;
            var arr = [];
            for (var elem, _pj_c = 0, _pj_a = iterable, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                elem = _pj_a[_pj_c];
                arr.push([n, elem]);
                n += 1;
            }
            return arr;
        }


        value_repeat = function(value, repetitions) {
            var tmp = [];
            for (var i = 0; i < repetitions; i++) {
                tmp.push(value);
            }
            return tmp;
        }


        add_SV = function(trials, kappa) {
            //# adds SV and delta SV to a trials dictionary
            var delay, sv_del, sv_immed, value, zip_data, zip_data2;
            trials["delay_SV"] = [];
            trials["deltaSV"] = [];
            zip_data = zippy(trials["cdd_delay_amt"], trials["cdd_delay_wait"]);
            for (var data, _pj_c = 0, _pj_a = zip_data, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                data = _pj_a[_pj_c];
                value = data["x"];
                delay = data["y"];
                trials["delay_SV"].push((value/(1+(kappa*delay)))); //#Silvia instructed us to assume alpha = 1
            }
            zip_data2 = zippy(trials["delay_SV"], trials["cdd_immed_amt"]);
            for (var data2, _pj_c = 0, _pj_a = zip_data2, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                data2 = _pj_a[_pj_c];
                sv_del = data2["x"];
                sv_immed = data2["y"];
                trials["deltaSV"].push((sv_del - sv_immed));
            }
            return trials;
        }


        get_SE = function(kappa, amt_del_options, time_options) {
            /*Creates trials of subjective equality
            Inputs:
            - kappa_value
            - amt_del_options: List of delayed amounts
            - time_options: List of delay times
            Output:
            - SE_trials: dictionary containing immediate options with same subjective value as delayed options
            */
            var SE_trials, amt_immed_for_D;
            SE_trials = {"category": [], "cdd_delay_wait": [], "cdd_immed_amt": [], "cdd_delay_amt": []};
            amt_del_options = [5.0, 20.0, 40.0];
            for (var delay, _pj_c = 0, _pj_a = time_options, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                delay = _pj_a[_pj_c];
                amt_immed_for_D = []; //#immediate amount with same SV as delay
                for (var value, _pj_f = 0, _pj_d = amt_del_options, _pj_e = _pj_d.length; (_pj_f < _pj_e); _pj_f += 1) {
                    value = _pj_d[_pj_f];
                    amt_immed_for_D.push(round_to_closest_half((value/(1 + (kappa * delay)))));
                }
                SE_trials["cdd_immed_amt"].push(...amt_immed_for_D);
                SE_trials["cdd_delay_amt"].push(...amt_del_options);
                SE_trials["cdd_delay_wait"].push(...value_repeat(round(delay), amt_del_options.length));
            }
            SE_trials["category"] = value_repeat("SE_trials", SE_trials["cdd_immed_amt"].length);
            return SE_trials;
        }


        max_neg_delta = function(kappa, amt_immed_options, amt_del_options, time_options) {
            //#Creates trials with max negative delta SV that are not catch trials (Vdel > Vn)
            var SV_diff, iSV_diff, ivl, ivn, min_SV_trials;
            min_SV_trials = {"category": [], "cdd_delay_wait": [], "cdd_immed_amt": [], "cdd_delay_amt": [], "deltaSV": []};
            for (var delay, _pj_c = 0, _pj_a = time_options, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                delay = _pj_a[_pj_c];
                SV_diff = 0;
                ivn = 0;
                ivl = 0;
                for (var vn, _pj_f = 0, _pj_d = amt_immed_options, _pj_e = _pj_d.length; (_pj_f < _pj_e); _pj_f += 1) {
                    vn = _pj_d[_pj_f];
                    for (var vl, _pj_i = 0, _pj_g = amt_del_options, _pj_h = _pj_g.length; (_pj_i < _pj_h); _pj_i += 1) {
                        vl = _pj_g[_pj_i];
                        if ((vl <= vn)) {
                            continue;
                        }
                        iSV_diff = ((vl / (1 + (kappa * delay))) - vn);
                        if ((iSV_diff < SV_diff)) {
                            SV_diff = iSV_diff;
                            [ivn, ivl] = [vn, vl];
                        }
                    }
                }
                min_SV_trials["category"].push("minSV");
                min_SV_trials["cdd_delay_wait"].push(round(delay));
                min_SV_trials["cdd_immed_amt"].push(ivn);
                min_SV_trials["cdd_delay_amt"].push(ivl);
                min_SV_trials["deltaSV"].push(SV_diff);
            }
            return min_SV_trials;
        }


        SE_trials = get_SE(kappa_value, amt_del_options, time_options);
        SE_trials = add_SV(SE_trials, kappa_value);
        min_trials = max_neg_delta(kappa_value, amt_immed_options, amt_del_options, time_options);

        min_SV_trials = {};
        min_trials_keys = ['category', 'cdd_delay_amt', 'cdd_delay_wait', 'cdd_immed_amt'];
        for (var key, _pj_c = 0, _pj_a = min_trials_keys, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            key = _pj_a[_pj_c];
            min_SV_trials[key] = [];
            min_SV_trials[key].push(...min_trials[key]);
            min_SV_trials[key].push(...min_trials[key]);
        }
        min_SV_trials = add_SV(min_SV_trials, kappa_value);


        target_SVdiff = function(min_SV_trials, Vmax, Amp) {
            //#Defines target SV_deltas to sample given SV range
            var SV_range_neg, SV_range_pos, min_sv_diff, sv_deltas;
            sv_deltas = [];
            for (var delta_sv, _pj_c = 0, _pj_a = min_SV_trials["deltaSV"], _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                delta_sv = _pj_a[_pj_c];
                sv_deltas.push(delta_sv);
            }
            min_sv_diff = Math.min(...sv_deltas);
            SV_range_pos = [];
            SV_range_neg = [];
            for (var g = 0, _pj_a = Number.parseInt((1/Amp)); (g < _pj_a); g += 1) {
                if ((g !== 0)) {
                    SV_range_pos.push(((Amp * Vmax) * g));
                    SV_range_neg.push(((Amp * min_sv_diff) * g));
                }
            }
            return [SV_range_pos, SV_range_neg];
        }


        tmp = target_SVdiff(min_SV_trials, V_max, Amp);
        target_SV_deltas_pos = tmp[0];
        target_SV_deltas_neg = tmp[1];


        get_int_pos_SV_delta = function(target_SV_deltas, amt_immed_options, time_options, Vmax = V_max, valence = "pos") {
            var Vdel, Vimm, category, category_value, delta_sv, index, max_sv_trials, valence;
            max_sv_trials = {"category": [], "cdd_delay_wait": [], "cdd_immed_amt": [], "cdd_delay_amt": []};
            Vimm = Math.min(...amt_immed_options);
            category = "Int+";
            if ((valence === "neg")) {
                Vimm = 10.0;
                category = "Int-";
            }
            for (var tmp, _pj_c = 0, _pj_a = mighty_numeration(target_SV_deltas, 1), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                tmp = _pj_a[_pj_c];
                index = tmp[0];
                delta_sv = tmp[1];
                category_value = index;
                for (var D, _pj_f = 0, _pj_d = time_options, _pj_e = _pj_d.length; (_pj_f < _pj_e); _pj_f += 1) {
                    D = _pj_d[_pj_f];
                    Vdel = [round_to_closest_half(((delta_sv + Vimm) * (1 + (kappa_value * D))))];
                    for (var v, _pj_i = 0, _pj_g = Vdel, _pj_h = _pj_g.length; (_pj_i < _pj_h); _pj_i += 1) {
                        v = _pj_g[_pj_i];
                        if ((v <= Vmax)) {
                            max_sv_trials["cdd_delay_amt"].push(v);
                            max_sv_trials["cdd_delay_wait"].push(round(D));
                            max_sv_trials["cdd_immed_amt"].push(Vimm);
                            max_sv_trials["category"].push((category + category_value.toString()));
                        }
                    }
                }
            }
            return max_sv_trials;
        }


        Int_pos = get_int_pos_SV_delta(target_SV_deltas_pos, amt_immed_options, time_options);
        Int_pos = add_SV(Int_pos, kappa_value);


        get_int_neg_SV_delta = function(target_SV_deltas, amt_immed_options, time_options, Vmax, d0 = 180, valence = "pos") {
            var Vdel, Vimm, category, category_value, delta_sv, index, max_sv_trials, valence;
            max_sv_trials = {"category": [], "cdd_delay_wait": [], "cdd_immed_amt": [], "cdd_delay_amt": []};
            Vimm = Math.max(...amt_immed_options);
            category = "Int+";
            if ((valence === "neg")) {
                Vdel = 65.0;
                category = "Int-";
            }
            for (var tmp, _pj_c = 0, _pj_a = mighty_numeration(target_SV_deltas, 1), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                tmp = _pj_a[_pj_c];
                index = tmp[0];
                delta_sv = tmp[1];
                category_value = index;
                for (var D, _pj_f = 0, _pj_d = time_options, _pj_e = _pj_d.length; (_pj_f < _pj_e); _pj_f += 1) {
                    D = _pj_d[_pj_f];
                    if ((D > d0)) {
                        continue;
                    }
                    Vimm = round_to_closest_half(((Vdel / (1 + (kappa_value * D))) - delta_sv));
                    if ((Vimm > Vdel)) {
                        continue;
                    }
                    max_sv_trials["cdd_delay_amt"].push(Vdel);
                    max_sv_trials["cdd_delay_wait"].push(round(D));
                    max_sv_trials["cdd_immed_amt"].push(Vimm);
                    max_sv_trials["category"].push((category + category_value.toString()));
                }
            }
            return max_sv_trials;
        }


        Int_neg = get_int_neg_SV_delta(target_SV_deltas_neg, amt_immed_options, time_options, V_max, d0 = d0, valence = "neg");
        Int_neg = add_SV(Int_neg, kappa_value);


        array_of_repetitions = function(value, repetitions) {
            var tmp = [];
            for (var i=0; i < repetitions; i++) {
                tmp.push(value);
            }
            return tmp;
        }


        get_Max_SVdelta = function(time_options, Vmax = V_max, Vmin = V_min) {
            //Creates trials with max positive delta by assigning largest amount we can pay to delay and least amount to immediate
            var Max_SVdelta;
            Max_SVdelta = {"category": ["MaxSV"], "cdd_delay_wait": [2], "cdd_immed_amt": [2.0], "cdd_delay_amt": [65.0]};
            Max_SVdelta["category"].push(...array_of_repetitions("MaxSV", time_options.length));
            Max_SVdelta["cdd_delay_amt"].push(...array_of_repetitions(Vmax, time_options.length));
            Max_SVdelta["cdd_immed_amt"].push(...array_of_repetitions(Vmin, time_options.length));
            Max_SVdelta["cdd_delay_wait"].push(...time_options);
            return Max_SVdelta;
        }


        Max_trials = get_Max_SVdelta(time_options, V_max, V_min);
        Max_SV_trials = {};
        var max_trials_keys = ['category', 'cdd_delay_amt', 'cdd_delay_wait', 'cdd_immed_amt'];
        for (var key, _pj_c = 0, _pj_a = max_trials_keys, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            key = _pj_a[_pj_c];
            Max_SV_trials[key] = [];
            Max_SV_trials[key].push(...Max_trials[key]);
            Max_SV_trials[key].push(...Max_trials[key]);
        }
        Max_SV_trials = add_SV(Max_SV_trials, kappa_value);


        dict_merge = function(list_dict) {
            var merged_dict, value;
            merged_dict = [];
            var keys_order = ["category", "cdd_immed_amt", "cdd_immed_wait", "cdd_delay_amt", "cdd_delay_wait", "delay_SV", "deltaSV"];
            for (var i = 0; i < list_dict.length; i++) {
                var dic = list_dict[i];
                for (var k = 0; k < keys_order.length; k++) {
                    var key = keys_order[k];
                    try {
                        var tmp;
                        if (dic.hasOwnProperty(key)) {
                            tmp = dic[key]
                        }
                        if (!merged_dict.hasOwnProperty(key)) {
                            merged_dict[key] = [];
                        }
                        if (tmp) {
                            merged_dict[key].push(...tmp);
                        }
                    } catch(error) {
                        console.log(error);
                    }
                }
            }
            return merged_dict;
        }


        trials = dict_merge([Max_SV_trials, Int_pos, SE_trials, Int_neg, min_SV_trials]);
        trials["cdd_immed_wait"] = (value_repeat(0, trials["category"].length));
        keys_order = ["category", "cdd_immed_amt", "cdd_immed_wait", "cdd_delay_amt", "cdd_delay_wait", "delay_SV", "deltaSV"];


        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);


        length_int_trials = function(trials, valence = "+") {
            var category, int_category, length_int_trials;
            category = [...trials["category"]];
            int_category = [];
            length_int_trials = 0;
            for (var c, _pj_c = 0, _pj_a = category, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                c = _pj_a[_pj_c];
                if (_pj.in_es6(valence, c)) {
                    int_category.push(c);
                    length_int_trials += 1;
                }
            }
            return length_int_trials;
        }


        needed_categories = function(trials, valence = "+") {
            var category, int_category;
            category = [...(new Set(trials["category"]))];
            int_category = [];
            for (var c, _pj_c = 0, _pj_a = category, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                c = _pj_a[_pj_c];
                if (_pj.in_es6(valence, c)) {
                    int_category.push(c);
                }
            }
            return int_category;
        }


        grab_additional_trial = function(trials, c, r) {
            var additional_trial, trial_category, trial_idx;
            for (var tmp, _pj_c = 0, _pj_a = mighty_numeration(trials["category"]), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                tmp = _pj_a[_pj_c];
                trial_idx = tmp[0];
                trial_category = tmp[1];
                if ((trial_category === c)) {
                    additional_trial = {"category": [(c.toString() + "_repeat")],
                                        "cdd_immed_amt": [trials["cdd_immed_amt"][trial_idx]],
                                        "cdd_immed_wait": [trials["cdd_immed_wait"][trial_idx]],
                                        "cdd_delay_amt": [trials["cdd_delay_amt"][trial_idx]],
                                        "cdd_delay_wait": [trials["cdd_delay_wait"][trial_idx]],
                                        "delay_SV": [trials["delay_SV"][trial_idx]],
                                        "deltaSV": [trials["deltaSV"][trial_idx]]};
                    r = (r - 1);
                    if ((r > 0)) {
                        continue;
                    }
                    return additional_trial;
                }
            }
        }


        add_trials = function(trials, trials_needed, valence = "+") {
            var additional_trial, int_category, nb_repeats;
            int_category = needed_categories(trials, valence);
            nb_repeats = 1;
            if ((int_category.length < trials_needed)) {
                nb_repeats = Number.parseInt((trials_needed / int_category.length));
            }
            for (var r = 0, _pj_a = nb_repeats; (r < _pj_a); r += 1) {
                for (var c, _pj_d = 0, _pj_b = int_category, _pj_c = _pj_b.length; (_pj_d < _pj_c); _pj_d += 1) {
                    c = _pj_b[_pj_d];
                    if ((trials_needed === 0)) {
                        return trials;
                    }
                    additional_trial = grab_additional_trial(trials, c, r);
                    if ((additional_trial === null)) {
                        additional_trial = grab_additional_trial(trials, c, 1);
                    }
                    trials = dict_merge([trials, additional_trial]);
                    trials_needed = (trials_needed - 1);
                }
            }
            return trials;
        }


        standard_trial_number = function(trials, desired_trials) {
            var int_diff, length_neg, length_pos, trials_gap, trials_needed, trials_needed_neg, trials_needed_pos;
            trials_needed = (desired_trials - trials["category"].length);
            length_pos = length_int_trials(trials, valence = "+");
            length_neg = length_int_trials(trials, valence = "-");
            int_diff = (length_pos - length_neg);
            if ((Math.abs(int_diff) < trials_needed)) {
                trials_gap = (trials_needed - Math.abs(int_diff));
                if ((int_diff < 0)) {
                    trials_needed_pos = (trials_gap + ((trials_needed - trials_gap)/2));
                    trials = add_trials(trials, trials_needed_pos, valence = "+");
                    trials_needed_neg = ((trials_needed - trials_gap)/2);
                    trials = add_trials(trials, trials_needed_neg, valence = "-");
                } else {
                    trials_needed_neg = (trials_gap + ((trials_needed - trials_gap)/2));
                    trials = add_trials(trials, trials_needed_neg, valence = "-");
                    trials_needed_pos = ((trials_needed - trials_gap)/2);
                    trials = add_trials(trials, trials_needed_pos, valence = "+");
                }
            } else {
                if ((int_diff > 0)) {
                    trials = add_trials(trials, trials_needed, valence = "-");
                } else {
                    trials = add_trials(trials, trials_needed, valence = "+");
                }
            }
            return trials;
        }


        cdd_desired_trials = 100;
        trials = standard_trial_number(trials, cdd_desired_trials);
        repeated_trials = random.choice(range(trials["category"].length), cdd_desired_trials - trials["category"].length); //indices for adding repeated trials
        if (!Array.isArray(repeated_trials)) {
            repeated_trials = [repeated_trials];
        }
        tmp_trials = {};
        Object.keys(trials).forEach(function(key) {
            tmp_trials[key] = [];
        });
        repeated_trials.forEach(function(rp_idx) {
            Object.keys(trials).forEach(function(key) {
            tmp_trials[key].push(trials[key][rp_idx]);
        });


            });
        cdd_trials_dict = dict_merge([trials, tmp_trials]);
  Routine cdd_pract2_trial
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    CodeComponent cdd_pract2_trial_code
      Code Type = JS
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      Begin JS Experiment:
        cdd_immed_pos2 = [];
        cdd_delay_pos2 = [];
        cdd_immed_resp2 = [];
        cdd_msg2 = "";
        cdd_pos2 = [[(- 0.5), 0], [0.5, 0]];
        cdd_resp2 = ["1", "2"];
      Begin JS Routine:
        my_loop = eval(cdd_practice_loop2_name);
        cdd_idx2 = random.randint(0, 1);
        cdd_immed_pos2 = cdd_pos2[cdd_idx2];
        cdd_immed_resp2 = cdd_resp2[cdd_idx2];

        if ((cdd_idx2 === 0)) {
            cdd_delay_pos2 = cdd_pos2[1];
        } else {
            cdd_delay_pos2 = cdd_pos2[0];
        }
      End JS Routine:
        cdd_pract2_key = cdd_pract2_trial_resp.keys;
        cdd_pract2_immed_key = cdd_pract2_trial_resp.corr;
        my_loop.addData("cdd_trial_type", "practice2");
    PolygonComponent cdd_pract2_trial_left_poly
      fillColor = 0,0,0
      lineWidth = 10
      pos = (-0.5, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    PolygonComponent cdd_pract2_trial_right_poly
      fillColor = 0,0,0
      lineWidth = 10
      pos = (0.5, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent cdd_pract2_trial_prompt_txt
      letterHeight = 0.06
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Which would you prefer?
      wrapWidth = 1.25
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    TextComponent cdd_pract2_trial_immed_txt
      letterHeight = 0.04
      pos [set every repeat] = cdd_immed_pos2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $str("$"+str(format(cdd_immed_amt2))) + "\n" + "\n" + " TODAY"
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    TextComponent cdd_pract2_trial_or_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = OR
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    TextComponent cdd_pract2_trial_delay_txt
      letterHeight = 0.04
      pos [set every repeat] = cdd_delay_pos2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $str("$"+str(format(cdd_delay_amt2))) + "\n" + "\n" + str(cdd_delay_wait2) + " DAYS"
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    PolygonComponent GRFX_fix3
      fillColor = [0,0,0]
      lineColor = [0,0,0]
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
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    PolygonComponent cdd_pract2_trial_cue
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, 1.0000, -1.0000
      saveStartStop = False
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
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    KeyboardComponent cdd_pract2_trial_resp
      allowedKeys = '1', '2'
      correctAns = $cdd_immed_resp2
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine cdd_pract2_feedback
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    CodeComponent cdd_pract2_fb_py
      Code Type = Both
      Begin JS Routine:
        if ((cdd_pract2_key === undefined)) {
            cdd_msg2 = "NO RESPONSE";
        } else {
            if (cdd_pract2_immed_key) {
                cdd_msg2 = "$ NOW";
            } else {
                cdd_msg2 = "$ LATER";
            }
        }
      Begin Routine:
        if len(cdd_pract2_key) == 0: #Ss did not respond
            cdd_msg2 = "NO RESPONSE"
        elif cdd_pract2_immed_key: #Ss chose smaller, immediate option
            cdd_msg2 = "$ NOW"
        else: #Ss chose larger, delayed option
            cdd_msg2 = "$ LATER"
    TextComponent cdd_pract2_fb_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $cdd_msg2
      wrapWidth = 1.25
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  Routine cdd_pract2_conf
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    CodeComponent cdd_pract2_conf_py
      Code Type = JS
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      Begin JS Routine:
        if ((cdd_pract2_key === undefined)) {
            continueRoutine = false;
        }
        conf1_color = [0, 0, 0];
        conf2_color = [0, 0, 0];
        conf3_color = [0, 0, 0];
        conf4_color = [0, 0, 0];
      Each JS Frame:
        cdd_pract2_conf_key = cdd_pract2_conf_resp.keys;
        if (!(cdd_pract2_conf_key === undefined) && (cdd_pract2_conf_key.length === 1)) {
            if ((cdd_pract2_conf_key === "1")) {
                conf1_color = "darkgray";
                conf2_color = [0, 0, 0];
                conf3_color = [0, 0, 0];
                conf4_color = [0, 0, 0];
            } else {
                if ((cdd_pract2_conf_key === "2")) {
                    conf1_color = [0, 0, 0];
                    conf2_color = "darkgray";
                    conf3_color = [0, 0, 0];
                    conf4_color = [0, 0, 0];
                } else {
                    if ((cdd_pract2_conf_key === "3")) {
                        conf1_color = [0, 0, 0];
                        conf2_color = [0, 0, 0];
                        conf3_color = "darkgray";
                        conf4_color = [0, 0, 0];
                    } else {
                        if ((cdd_pract2_conf_key === "4")) {
                            conf1_color = [0, 0, 0];
                            conf2_color = [0, 0, 0];
                            conf3_color = [0, 0, 0];
                            conf4_color = "darkgray";
                        }
                    }
                }
            }
        }
      End JS Routine:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        if (!(cdd_pract2_conf_key == undefined) && (cdd_pract2_conf_key.length === 1)) {
            if ((Array.isArray(cdd_pract2_conf_key))) {
                if (_pj.in_es6(cdd_pract2_conf_key.slice((- 1))[0], ["1", "2", "3", "4"])) {
                    cdd_conf_resps.push(cdd_pract2_conf_key);
                }
            } else {
                if (_pj.in_es6(cdd_pract2_conf_key, ["1", "2", "3", "4"])) {
                    cdd_conf_resps.push(cdd_pract2_conf_key);
                }
            }
        }
        conf1_color = [0, 0, 0];
        conf2_color = [0, 0, 0];
        conf3_color = [0, 0, 0];
        conf4_color = [0, 0, 0];

        cdd_conf1.setFillColor(new util.Color(conf1_color), false);
        cdd_conf2.setFillColor(new util.Color(conf2_color), false);
        cdd_conf3.setFillColor(new util.Color(conf3_color), false);
        cdd_conf4.setFillColor(new util.Color(conf4_color), false);
    TextComponent cdd_pract2_conf_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = How confident are you in your choice?
      wrapWidth = 1.25
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    PolygonComponent cdd_pract2_conf1
      fillColor [set every frame] = $conf1_color
      lineWidth = 10
      pos = (-0.6, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent cdd_pract2_conf1_txt
      letterHeight = 0.04
      pos = (-0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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      text:
        Not at all
        confident

        1
    PolygonComponent cdd_pract2_conf2
      fillColor [set every frame] = $conf2_color
      lineWidth = 10
      pos = (-0.2, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent cdd_pract2_conf2_txt
      letterHeight = 0.04
      pos = (-0.2, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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      text:
        Less
        confident

        2
    PolygonComponent cdd_pract2_conf3
      fillColor [set every frame] = $conf3_color
      lineWidth = 10
      pos = (0.2, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent cdd_pract2_conf3_txt
      letterHeight = 0.04
      pos = (0.2, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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      text:
        Somewhat
        confident

        3
    PolygonComponent cdd_pract2_conf4
      fillColor [set every frame] = $conf4_color
      lineWidth = 10
      pos = (0.6, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent cdd_pract2_conf4_txt
      letterHeight = 0.04
      pos = (0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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      text:
        Very
        confident

        4
    KeyboardComponent cdd_pract2_conf_resp
      allowedKeys = '1', '2', '3', '4'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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  Routine cdd_pract2_iti
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    CodeComponent cdd_pract2_iti_code
      Code Type = JS
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      Begin JS Routine:
        if (!(cdd_pract2_trials.thisTrialN == undefined) && (cdd_pract2_trials.thisTrialN === 2)) {
            continueRoutine = false;
        }
    PolygonComponent cdd_pract2_iti_poly
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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Flow
  Routine cdd_instr1
  Routine cdd_instr2
  Routine cdd_instr3
  Routine cdd_pract_instr
  Routine cdd_init_fix
  LoopInitiator cdd_pract1_trials loopType="TrialHandler"
    conditionsFile = cdd_practice1.csv
    loopType = random
    nReps = 0
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    conditions:
      [OrderedDict([('idm_task', 'cdd'), ('item', 1), ('cdd_immed_amt1', 10), ('cdd_immed_wait1', 0), ('cdd_delay_amt1', 65), ('cdd_delay_wait1', 9)]),
      OrderedDict([('idm_task', 'cdd'), ('item', 2), ('cdd_immed_amt1', 25), ('cdd_immed_wait1', 0), ('cdd_delay_amt1', 35), ('cdd_delay_wait1', 150)]),
      OrderedDict([('idm_task', 'cdd'), ('item', 3), ('cdd_immed_amt1', 10), ('cdd_immed_wait1', 0), ('cdd_delay_amt1', 19), ('cdd_delay_wait1', 89)])]
    Routine cdd_pract1_trial
    Routine cdd_pract1_feedback
  LoopTerminator cdd_pract1_trials
  Routine cdd_qp_instr
  LoopInitiator cdd_qp_trials loopType="TrialHandler"
    conditionsFile = cdd_qp_trials.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('cdd_qp_idx', 0)]),
      OrderedDict([('cdd_qp_idx', 1)]),
      OrderedDict([('cdd_qp_idx', 2)]),
      OrderedDict([('cdd_qp_idx', 3)]),
      OrderedDict([('cdd_qp_idx', 4)]),
      OrderedDict([('cdd_qp_idx', 5)]),
      OrderedDict([('cdd_qp_idx', 6)]),
      OrderedDict([('cdd_qp_idx', 7)]),
      OrderedDict([('cdd_qp_idx', 8)]),
      OrderedDict([('cdd_qp_idx', 9)]),
      OrderedDict([('cdd_qp_idx', 10)]),
      OrderedDict([('cdd_qp_idx', 11)]),
      OrderedDict([('cdd_qp_idx', 12)]),
      OrderedDict([('cdd_qp_idx', 13)]),
      OrderedDict([('cdd_qp_idx', 14)]),
      OrderedDict([('cdd_qp_idx', 15)]),
      OrderedDict([('cdd_qp_idx', 16)]),
      OrderedDict([('cdd_qp_idx', 17)]),
      OrderedDict([('cdd_qp_idx', 18)]),
      OrderedDict([('cdd_qp_idx', 19)])]
    Routine cdd_questplus
    Routine cdd_questplus_fb
  LoopTerminator cdd_qp_trials
  Routine cdd_schedule_gen
  Routine cdd_pract_instr
  LoopInitiator cdd_pract2_trials loopType="TrialHandler"
    conditionsFile = cdd_practice2.csv
    loopType = random
    nReps = 0
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    conditions:
      [OrderedDict([('idm_task', 'cdd'), ('item', 1), ('cdd_immed_amt2', 10), ('cdd_immed_wait2', 0), ('cdd_delay_amt2', 65), ('cdd_delay_wait2', 9)]),
      OrderedDict([('idm_task', 'cdd'), ('item', 2), ('cdd_immed_amt2', 25), ('cdd_immed_wait2', 0), ('cdd_delay_amt2', 35), ('cdd_delay_wait2', 150)]),
      OrderedDict([('idm_task', 'cdd'), ('item', 3), ('cdd_immed_amt2', 10), ('cdd_immed_wait2', 0), ('cdd_delay_amt2', 19), ('cdd_delay_wait2', 89)])]
    Routine cdd_pract2_trial
    Routine cdd_pract2_feedback
    Routine cdd_pract2_conf
    Routine cdd_pract2_iti
  LoopTerminator cdd_pract2_trials
  Routine cdd_trial_instr
  Routine cdd_init_fix
  LoopInitiator cdd_trials loopType="TrialHandler"
    conditionsFile = cdd_gen_trials_idx.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('cdd_trial_idx', 0)]),
      OrderedDict([('cdd_trial_idx', 1)]),
      OrderedDict([('cdd_trial_idx', 2)]),
      OrderedDict([('cdd_trial_idx', 3)]),
      OrderedDict([('cdd_trial_idx', 4)]),
      OrderedDict([('cdd_trial_idx', 5)]),
      OrderedDict([('cdd_trial_idx', 6)]),
      OrderedDict([('cdd_trial_idx', 7)]),
      OrderedDict([('cdd_trial_idx', 8)]),
      OrderedDict([('cdd_trial_idx', 9)]),
      OrderedDict([('cdd_trial_idx', 10)]),
      OrderedDict([('cdd_trial_idx', 11)]),
      OrderedDict([('cdd_trial_idx', 12)]),
      OrderedDict([('cdd_trial_idx', 13)]),
      OrderedDict([('cdd_trial_idx', 14)]),
      OrderedDict([('cdd_trial_idx', 15)]),
      OrderedDict([('cdd_trial_idx', 16)]),
      OrderedDict([('cdd_trial_idx', 17)]),
      OrderedDict([('cdd_trial_idx', 18)]),
      OrderedDict([('cdd_trial_idx', 19)]),
      OrderedDict([('cdd_trial_idx', 20)]),
      OrderedDict([('cdd_trial_idx', 21)]),
      OrderedDict([('cdd_trial_idx', 22)]),
      OrderedDict([('cdd_trial_idx', 23)]),
      OrderedDict([('cdd_trial_idx', 24)]),
      OrderedDict([('cdd_trial_idx', 25)]),
      OrderedDict([('cdd_trial_idx', 26)]),
      OrderedDict([('cdd_trial_idx', 27)]),
      OrderedDict([('cdd_trial_idx', 28)]),
      OrderedDict([('cdd_trial_idx', 29)]),
      OrderedDict([('cdd_trial_idx', 30)]),
      OrderedDict([('cdd_trial_idx', 31)]),
      OrderedDict([('cdd_trial_idx', 32)]),
      OrderedDict([('cdd_trial_idx', 33)]),
      OrderedDict([('cdd_trial_idx', 34)]),
      OrderedDict([('cdd_trial_idx', 35)]),
      OrderedDict([('cdd_trial_idx', 36)]),
      OrderedDict([('cdd_trial_idx', 37)]),
      OrderedDict([('cdd_trial_idx', 38)]),
      OrderedDict([('cdd_trial_idx', 39)]),
      OrderedDict([('cdd_trial_idx', 40)])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
    Routine cdd_trial
    Routine cdd_feedback
    Routine cdd_conf
    Routine cdd_trial_iti
  LoopTerminator cdd_trials
  Routine cdd_end
  Routine cdd_bonus
