PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Data filename = u'/data/%s' % (expInfo['participant'])
  Experiment info = {'participant': 'CRDM'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['crdm_gen_test_idx.csv', 'crdm_practice2.csv', 'crdm_practice1.csv', 'crdm_gen_trials_idx.csv', 'crdm_questplus_trials.csv', 'images/risk_red_75.bmp', 'images/crdm_screen.png', 'images/ambig_24.bmp', 'images/risk_red_25.bmp', 'images/response_box1-2.png', 'images/risk_blue_75.bmp', 'images/FB_cert.png', 'images/risk_blue_50.bmp', 'images/2key.png', 'images/ambig_74.bmp', 'images/FB_lott.png', 'images/risk_blue_13.bmp', 'images/risk_red_38.bmp', 'images/risk_red_50.bmp', 'images/risk_red_13.bmp', 'images/risk_blue_38.bmp', 'images/risk_blue_25.bmp', 'images/ambig_50.bmp', 'images/fixTarget.bmp', 'images/FB_nonresp.png', 'images/4key.png']
  Screen = 1
  Units = height
  Use version = 2023.2.2
  Window size (pixels) = [1728, 1117]
  expName = crdm_ado
  keyboardBackend = Pyglet
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Routines
  Routine crdm_instr1
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    CodeComponent crdm_instr1_JS
      Code Type = JS
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      Before JS Experiment:
        var exp_proceed = true;
        var crdm_earnings = [];
      Begin JS Experiment:
        //function for random.random used in python
        random = {
        random: function(){return Math.random()},
        randint: function(start, end){return Math.round(Math.random() * (end - start) + start)},
        choices: function(items, weights){
            var i;
            for (i = 0; i < weights.length; i++)
                weights[i] += weights[i - 1] || 0;
            var random = Math.random() * weights[weights.length - 1];
            for (i = 0; i < weights.length; i++)
                if (weights[i] > random)
                    break;
            return items[i] }
        }

        const formatter = new Intl.NumberFormat('en-US', {
          minimumFractionDigits: 2,
          maximumFractionDigits: 2,
        });

        format = formatter.format;
      Begin JS Routine:
        crdm_practice_loop1_name = "crdm_pract1_trials";
        crdm_questplus_loop_name = "crdm_questplus_trials";
        crdm_practice_loop2_name = "crdm_pract2_trials";
        crdm_loop_name = "crdm_trials";
    CodeComponent crdm_instr1_py
      Code Type = Py
      disabled = True
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      Before Experiment:
        ###code written by Mandy Renfro (2023)###
        import random
        import os
        exp_proceed = True
        crdm_earnings = []

        import ricardo_gain as rg
        import ricardo_loss as rl
        #ADO Step 0
        g_log_lik, g_ent, g_log_post, g_sets = rg.step0() #gains
        l_log_lik, l_ent, l_log_post, l_sets = rl.step0() #losses
      Begin Experiment:
        subid = expInfo["participant"]

        if not os.path.exists("data/{0}".format(subid)): #does subject exist
            os.mkdir("data/{0}".format(subid))
        if not os.path.exists("data/{0}/session{1}".format(subid, expInfo["session"])): #does session exist
            os.mkdir("data/{0}/session{1}".format(subid, expInfo["session"]))

        def format(number):
            return "[0:0.2f]".format(number)
      Begin Routine:
        #provides specific loop names for each of two interations of CRDM
        #to provide flexibility of crdm_pract_trial and crdm_trial routines
        practice_loop1_name = "crdm_pract1_trials"
        practice_loop2_name = "crdm_pract2_trials"
        loop_name = "crdm_trials"
    TextComponent crdm_instr1_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Risk & Ambiguity Task *
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    TextComponent crdm_instr1_txt
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        In this decision making task, you will be asked to make economic choices between:

        - Gaining/losing a certain amount
        OR
        - Playing a lottery for the chance to win a larger gain or smaller loss

        Your choice for each trial will determine how much money you could earn if randomly selected as your bonus earnings trial.
    TextComponent crdm_instr1_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_instr2
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    TextComponent crdm_instr2_lottname_txt
      letterHeight = 0.05
      pos = (-0.2, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = *Playing the Lottery*
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    TextComponent crdm_instr2_txt
      letterHeight = 0.04
      pos = (-0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        The lottery consists of an imaginary bag containing 100 poker chips, some red and some blue. To play, you pull a random chip from the bag.

        The figure on the right represents the proportion of blue and red chips in the imaginary bag.

        In this example, most chips are blue (75 of 100) and fewer are red (25 of 100).
    ImageComponent crdm_instr2_img
      image = images/risk_blue_75.bmp
      pos = (0.6, 0)
      saveStartStop = False
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent crdm_instr2_lott0_txt
      letterHeight = 0.04
      pos = (0.6, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$0
      wrapWidth = 1.5
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    TextComponent crdm_instr2_lott20_txt
      letterHeight = 0.04
      pos = (0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$20
      wrapWidth = 1.5
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    TextComponent crdm_instr2_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_instr3
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    TextComponent crdm_instr3_lottname_txt
      letterHeight = 0.05
      pos = (-0.2, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = *Playing the Lottery*
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    TextComponent crdm_instr3_txt
      letterHeight = 0.04
      pos = (-0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Given information about the number of blue and red chips in the bag, you can decide whether you would prefer a certain monetary outcome or if you would rather play the lottery for a chance to win a different outcome

        In this example, you have a 75% chance of pulling a blue chip and winning \$20. Conversely, you have a 25% chance of pulling a red chip and receiving \$0.

        The value for each color will change from bag to bag. Read the \$ amount above the red and below the blue to know the value of each chip color.
    ImageComponent crdm_instr3_img
      image = images/risk_blue_75.bmp
      pos = (0.6, 0)
      saveStartStop = False
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent crdm_instr3_lott0_txt
      letterHeight = 0.04
      pos = (0.6, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$0
      wrapWidth = 1.5
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    TextComponent crdm_instr3_lott20_txt
      letterHeight = 0.04
      pos = (0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$20
      wrapWidth = 1.5
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    TextComponent crdm_instr3_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr3_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_instr4
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    TextComponent crdm_instr4_lottname_txt
      letterHeight = 0.05
      pos = (-0.2, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = *Playing the Lottery*
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    TextComponent crdm_instr4_txt
      letterHeight = 0.04
      pos = (-0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        For some lotteries, information about the contents of the bag may be partially hidden.

        In this example, the bag has at least 25 blue chips and 25 red chips. However, the color of the remaining 50 chips is unknown. The remaining 50 chips could be all red, all blue, or any combination of the two.
    ImageComponent crdm_instr4_img
      image = images/ambig_50.bmp
      pos = (0.6, 0)
      saveStartStop = False
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent crdm_instr4_lott0_txt
      letterHeight = 0.04
      pos = (0.6, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$0
      wrapWidth = 1.5
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    TextComponent crdm_instr4_lott20_txt
      letterHeight = 0.04
      pos = (0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$20
      wrapWidth = 1.5
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    TextComponent crdm_instr4_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr4_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_instr5
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    TextComponent crdm_instr5_txt
      letterHeight = 0.035
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = The lottery bag will appear in the center of the screen. The certain dollar amount will be presented on either the right or left side of the bag. In this example, the certain \$5 would be the left option, and the lottery would be the right option:
      wrapWidth = 1.5
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    ImageComponent crdm_instr5_img
      image = images/risk_blue_75.bmp
      pos = (0, -0.05)
      saveStartStop = False
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent crdm_instr5_lott_top_txt
      letterHeight = 0.04
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$0
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    TextComponent crdm_instr5_lott_bot_txt
      letterHeight = 0.04
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$20
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    TextComponent crdm_instr5_sure_txt
      letterHeight = 0.06
      pos = (-0.5, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$5
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    TextComponent crdm_instr5_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr5_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_instr6
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    TextComponent crdm_instr6_txt
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        When the green circle appears, use the number keys at the top of your keyboard to indicate your choice:

        Press 1 to select the left option
        Press 2 to select the right option
    ImageComponent crdm_instr6_img
      image = images/2key.png
      pos = (0, -0.1)
      saveStartStop = False
      size = (0.6, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent crdm_instr6_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr6_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_instr7
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    TextComponent crdm_instr7_txt
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.35
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      text:
        After each choice, you will be asked to rate your choice confidence.
        1 indicates you couldn't decide which option you preferred and chose at random, while 4 indicates total certainty in your choice. Use the number keys at the top of your keyboard to indicate your confidence:

        Press 1 - Not at all confident
        Press 2 - Less confident
        Press 3 - Somewhat confident
        Press 4 - Very confident
    ImageComponent crdm_instr7_img
      image = images/4key.png
      pos = (0, -0.15)
      saveStartStop = False
      size = (0.6, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent crdm_instr7_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr7_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_instr8
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    TextComponent crdm_instr8_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Risk & Ambiguity Task *
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    TextComponent crdm_instr8_warn_txt
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        You must answer both the initial question and confidence prompts to complete each trial. The experiment will end if you (1) miss more than 4 trials, or (2) provide responses which indicate you did not understand, or are not following, task instructions. If this happens, you will not be eligible to receive a *bonus earnings*.

        Please remain engaged throughout the experiment and provide earnest, sincere responses for each trial. Remember, your choices could help you walk away with an additional bonus ranging from \$2 to \$65, depending on the seleced *bonus earnings* trial!

        Thank you for your participation!
    TextComponent crdm_instr8_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr8_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_init_fix
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    PolygonComponent crdm_init_fix_poly
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine crdm_feedback
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    CodeComponent crdm_feedback_code
      Code Type = Both
      Begin JS Routine:
        if ((crdm_key === undefined)) {
            crdm_msg = "NO RESPONSE";
        } else {
            if (crdm_sure_key) {
                crdm_msg = ("CERTAIN $" + format(crdm_sure_amt.toString()));
            } else {
                crdm_msg = "LOTTERY";
            }
        }
      Begin Routine:
        if len(crdm_key) == 0: #Ss did not respond
            crdm_msg = "NO RESPONSE"
        elif crdm_sure_key: #Ss chose sure $5
            crdm_msg = "CERTAIN $" + str(format(crdm_sure_amt))
        else: #Ss chose lottery
            crdm_msg = "LOTTERY"
    TextComponent crdm_feedback_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $crdm_msg
      wrapWidth = 1.5
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  Routine crdm_conf
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    CodeComponent crdm_conf_code
      Code Type = Both
      Begin JS Routine:
        if ((crdm_key === undefined)) {
            continueRoutine = false;
        }
        conf1_color = [0, 0, 0];
        conf2_color = [0, 0, 0];
        conf3_color = [0, 0, 0];
        conf4_color = [0, 0, 0];
      Begin Routine:
        if len(crdm_key) == 0: #Ss did not respond
            continueRoutine = False #do not run conf routine

        #set default gray for all four response boxes
        conf1_color = [0, 0, 0]
        conf2_color = [0, 0, 0]
        conf3_color = [0, 0, 0]
        conf4_color = [0, 0, 0]
      Each Frame:
        crdm_conf_key = crdm_conf_resp.keys
        if len(crdm_conf_key) == 1: #Ss responded
            if crdm_conf_key == "1": #not at all confident
                #change box color to indicate selection
                conf1_color = "darkgray"
                conf2_color = [0,0,0]
                conf3_color = [0,0,0]
                conf4_color = [0,0,0]
            elif crdm_conf_key == "2": #less confident
                conf1_color = [0,0,0]
                conf2_color = "darkgray"
                conf3_color = [0,0,0]
                conf4_color = [0,0,0]
            elif crdm_conf_key == "3": #somewhat confident
                conf1_color = [0,0,0]
                conf2_color = [0,0,0]
                conf3_color = "darkgray"
                conf4_color = [0,0,0]
            elif crdm_conf_key == "4": #very confident
                conf1_color = [0,0,0]
                conf2_color = [0,0,0]
                conf3_color = [0,0,0]
                conf4_color = "darkgray"
      Each JS Frame:
        crdm_conf_key = crdm_conf_resp.keys;
        if (!(crdm_conf_key == undefined) && (crdm_conf_key.length === 1)) {
            if ((crdm_conf_key === "1")) {
                conf1_color = "darkgray";
                conf2_color = [0, 0, 0];
                conf3_color = [0, 0, 0];
                conf4_color = [0, 0, 0];
            } else {
                if ((crdm_conf_key === "2")) {
                    conf1_color = [0, 0, 0];
                    conf2_color = "darkgray";
                    conf3_color = [0, 0, 0];
                    conf4_color = [0, 0, 0];
                } else {
                    if ((crdm_conf_key === "3")) {
                        conf1_color = [0, 0, 0];
                        conf2_color = [0, 0, 0];
                        conf3_color = "darkgray";
                        conf4_color = [0, 0, 0];
                    } else {
                        if ((crdm_conf_key === "4")) {
                            conf1_color = [0, 0, 0];
                            conf2_color = [0, 0, 0];
                            conf3_color = [0, 0, 0];
                            conf4_color = "darkgray";
                        }
                    }
                }
            }
        }
      End JS Routine:
        my_loop.addData("crdm_conf", crdm_conf_key);
      End Routine:
        my_loop.addData("crdm_conf", crdm_conf_key);
    TextComponent crdm_conf_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = How confident are you in your choice?
      wrapWidth = 1.5
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    PolygonComponent crdm_conf1
      fillColor [set every frame] = $conf1_color
      lineWidth = 10
      pos = (-0.6, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent crdm_conf1_txt
      letterHeight = 0.04
      pos = (-0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Not at all
        confident

        1
    PolygonComponent crdm_conf2
      fillColor [set every frame] = $conf2_color
      lineWidth = 10
      pos = (-0.2, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent crdm_conf2_txt
      letterHeight = 0.04
      pos = (-0.2, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Less
        confident

        2
    PolygonComponent crdm_conf3
      fillColor [set every frame] = $conf3_color
      lineWidth = 10
      pos = (0.2, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent crdm_conf3_txt
      letterHeight = 0.04
      pos = (0.2, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Somewhat
        confident

        3
    PolygonComponent crdm_conf4
      fillColor [set every frame] = $conf4_color
      lineWidth = 10
      pos = (0.6, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent crdm_conf4_txt
      letterHeight = 0.04
      pos = (0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Very
        confident

        4
    KeyboardComponent crdm_conf_resp
      allowedKeys = '1', '2', '3', '4'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine crdm_trial_instr
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    CodeComponent crdm_trial_instr_code
      Code Type = Both
      Begin JS Routine:
        crdm_task_resps = [];
        crdm_conf_resps = [];
        crdm_catch_trials = [];
        crdm_iti_list = function () {
            var _pj_a = [], _pj_b = util.range(144);
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var i = _pj_b[_pj_c];
                _pj_a.push(random.random());
            }
            return _pj_a;
        }
        .call(this);
        crdm_s = util.sum(crdm_iti_list);
        crdm_iti_list = function () {
            var _pj_a = [], _pj_b = crdm_iti_list;
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var i = _pj_b[_pj_c];
                _pj_a.push(((i * 144) / crdm_s));
            }
            return _pj_a;
        }
        .call(this);
      Begin Routine:
        crdm_task_resps = []
        crdm_conf_resps = []
        crdm_catch_trials = []
        crdm_iti_list = [random.random() for i in range(144)] #create list of random floats (0-1) which is length of trial schedule
        crdm_s = sum(crdm_iti_list) #sum list of rnadom floats
        crdm_iti_list = [i*144/crdm_s for i in crdm_iti_list] #for each item in iti_list: multiple by list length, then divide by list sum
    TextComponent crdm_trial_instr_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Risk & Ambiguity Task *
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    TextComponent crdm_trial_instr_txt
      letterHeight = 0.04
      pos = (0, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        Now that you've practiced, we'll begin the second section of the task.

        You will have 3 seconds to view and consider the certain and lottery options, and 2 seconds to choose once the green circle appears. You will then have 3 seconds to rate your confidence.
    TextComponent crdm_trial_instr_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to begin.
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    KeyboardComponent crdm_trial_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_trial
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    CodeComponent crdm_trial_JS
      Code Type = JS
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      Begin JS Experiment:
        //var crdm_sure_amt, crdm_sure_p, crdm_lott_top, crdm_lott_bot, crdm_lott_p, crdm_amb_lev, crdm_domain, crdm_img;
        //var delta_time, sure_pos, sure_resp, crdm_msg, pos, resp, task_nonresp_ct, conf_nonresp_ct;

        crdm_delta_time = 0; //used in variable ITI
        crdm_sure_pos = []; //position of certain option
        crdm_sure_resp = []; //response key for certain option
        crdm_msg = ""; //feedback message string
        crdm_pos = [[(- 0.5), 0], [0.5, 0]]; //left/right screen locations
        crdm_resp = ["1", "2"]; //1 = left, 2 = right
        crdm_task_nonresp_ct = 0;
        crdm_conf_nonresp_ct = 0;
      Begin JS Routine:
        my_loop = eval(crdm_loop_name);
        crdm_stop_timer = null;
        crdm_stopped_time = 0;
        crdm_lott_outcome = 0;
        crdm_conf_key = [];
        crdm_idx = random.randint(0, 1);
        crdm_sure_pos = crdm_pos[crdm_idx];
        crdm_sure_resp = crdm_resp[crdm_idx];


        //crdm_trials_dict = {"crdm_safe_sv":[], "crdm_lott_sv":[], "crdm_lott":[], "crdm_sure_amt":[], //#dict for trial variables
        //                    "crdm_lott_p":[], "crdm_amb_lev":[], "crdm_delta_sv":[], "crdm_domain":[]};
        //assign QuestPlus generated variables for trial presentation
        crdm_sure_amt = crdm_trials_dict["crdm_sure_amt"][crdm_trial_idx];
        crdm_sure_p = 100;
        crdm_lott_p = crdm_trials_dict["crdm_lott_p"][crdm_trial_idx];
        crdm_amb_lev = crdm_trials_dict["crdm_amb_lev"][crdm_trial_idx];
        crdm_domain = crdm_trials_dict["crdm_domain"][crdm_trial_idx];
        crdm_lott_top = "";
        crdm_lott_bot = "";
        crdm_img = "";

        if (crdm_nonzero_side == "top") {
            crdm_lott_top = crdm_trials_dict["crdm_lott"][crdm_trial_idx];
            crdm_lott_bot = 0;
            if (crdm_trials_dict["crdm_amb_lev"][crdm_trial_idx] != 0) { //check if ambiguity trial
                crdm_img = "ambig_" + parseInt(crdm_trials_dict["crdm_amb_lev"][crdm_trial_idx] * 100) + ".bmp";
            } else {
                crdm_img = "risk_red_" + parseInt(crdm_trials_dict["crdm_lott_p"][crdm_trial_idx] * 100) + ".bmp";
            }
        } else {
            crdm_lott_top = 0
            crdm_lott_bot = crdm_trials_dict["crdm_lott"][crdm_trial_idx];
            if (crdm_trials_dict["crdm_amb_lev"][crdm_trial_idx] != 0) { //check if ambiguity trial
                crdm_img = "ambig_" + parseInt(crdm_trials_dict["crdm_amb_lev"][crdm_trial_idx] * 100) + ".bmp";
            } else {
                crdm_img = "risk_blue_" + parseInt(crdm_trials_dict["crdm_lott_p"][crdm_trial_idx] * 100) + ".bmp";
            }
        }

        //save QuestPlus generated variables to output csv
        my_loop.addData("crdm_sure_amt", crdm_sure_amt);
        my_loop.addData("crdm_lott_top", crdm_lott_top);
        my_loop.addData("crdm_lott_bot", crdm_lott_bot);
        my_loop.addData("crdm_sure_p", crdm_sure_p);
        my_loop.addData("crdm_lott_p", crdm_lott_p);
        my_loop.addData("crdm_amb_lev", crdm_amb_lev);
        my_loop.addData("crdm_domain", crdm_domain);
        my_loop.addData("crdm_img", crdm_img);
      Each JS Frame:
        if (!(crdm_trial_resp.keys == undefined) && (crdm_trial_resp.keys.length === 1)) {
            if ((crdm_stop_timer === null)) {
                crdm_stop_timer = new util.Clock();
            } else {
                if ((crdm_stop_timer.getTime() >= 0.5)) {
                    continueRoutine = false;
                }
            }
        }
      End JS Routine:
        crdm_key = crdm_trial_resp.keys;
        crdm_sure_key = crdm_trial_resp.corr;
        my_loop.addData("crdm_trial_type", "task");
        lott_outcome = 0;
        if ((((crdm_trial_resp.rt) === undefined) || (crdm_trial_resp.rt >= (2 - 0.5)))) {
            crdm_delta_time = 0;
        } else {
            crdm_delta_time = Math.max(0, (2 - (crdm_trial_resp.rt + crdm_stopped_time)));
        }
        if (!(crdm_key === undefined) && (crdm_key.length === 1)) {
            if ((crdm_sure_key === 1)) {
                crdm_earnings.push(["sure", crdm_sure_amt, crdm_sure_amt, crdm_img, crdm_lott_top, crdm_lott_bot, (- 1), crdm_nonzero_side, crdm_domain]);
                my_loop.addData("crdm_choice", 0);
                my_loop.addData("crdm_choice2", "sure");
                my_loop.addData("crdm_lott", "");
                my_loop.addData("crdm_lott2", "");
            } else {
                lott_outcome = random.choice([0, 1], [100 - Number.parseInt(crdm_lott_p * 100), Number.parseInt(crdm_lott_p * 100)]);
                my_loop.addData("crdm_choice", 1);
                my_loop.addData("crdm_choice2", "lott");
                my_loop.addData("crdm_lott", lott_outcome);
                if ((lott_outcome === 1)) {
                    my_loop.addData("crdm_lott2", "win");
                    if ((crdm_domain === 1)) { //gain
                        my_loop.addData("crdm_domain2", "gain");
                        if ((Number.parseInt(crdm_lott_top) !== 0)) {
                            crdm_earnings.push(["lott", crdm_lott_top, crdm_sure_amt, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_nonzero_side, crdm_domain]);
                        } else {
                            crdm_earnings.push(["lott", crdm_lott_bot, crdm_sure_amt, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_nonzero_side, crdm_domain]);
                        }
                    } else {
                        if ((crdm_domain === -1)) { //loss
                            my_loop.addData("crdm_domain2", "loss");
                            if ((Number.parseInt(crdm_lott_top) === 0)) {
                                crdm_earnings.push(["lott", crdm_lott_top, crdm_sure_amt, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_nonzero_side, crdm_domain]);
                            } else {
                                crdm_earnings.push(["lott", crdm_lott_bot, crdm_sure_amt, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_nonzero_side, crdm_domain]);
                            }
                        }
                    }
                } else {
                    my_loop.addData("crdm_lott2", "lose");
                    if ((crdm_domain === 1)) { //gain
                        my_loop.addData("crdm_domain2", "gain");
                        if ((Number.parseInt(crdm_lott_top) === 0)) {
                            crdm_earnings.push(["lott", crdm_lott_top, crdm_sure_amt, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_nonzero_side, crdm_domain]);
                        } else {
                            crdm_earnings.push(["lott", crdm_lott_bot, crdm_sure_amt, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_nonzero_side, crdm_domain]);
                        }
                    } else {
                        if ((crdm_domain === -1)) { //loss
                            my_loop.addData("crdm_domain2", "loss");
                            if ((Number.parseInt(crdm_lott_top) < 0)) {
                                crdm_earnings.push(["lott", crdm_lott_top, crdm_sure_amt, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_nonzero_side, crdm_domain]);
                            } else {
                                crdm_earnings.push(["lott", crdm_lott_bot, crdm_sure_amt, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_nonzero_side, crdm_domain]);
                            }
                        }
                    }
                }
            }
        }
    CodeComponent crdm_trial_py
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        delta_time = 0 #used in variable ITI
        sure_pos = [] #position of certain option
        sure_resp = [] #response key for certain option
        crdm_msg = "" #feedback message string

        #stimuli positions and respective responses
        pos = [[-0.5, 0], [0.5, 0]] #left/right screen locations
        resp = ["1", "2"] #1 = left, 2 = right
      Begin Routine:
        my_loop = eval(loop_name) #variable for saving data
        stop_timer = None
        stopped_time = 0
        lott_outcome = 0

        idx = random.randint(0,1) #random index (left = 0, right = 1)
        sure_pos = pos[idx] #idx certain amt position
        sure_resp = resp[idx] #idx certain amt response
      Each Frame:
        if len(crdm_trial_resp.keys) == 1: #Ss responded
            if stop_timer == None:
                stop_timer = core.Clock() #get current exp time
            else:
                if stop_timer.getTime() >= 0.5:
                    continueRoutine = False
      End Routine:
        key = crdm_trial_resp.keys #variable for feedback routine
        sure_key = crdm_trial_resp.corr #1 if certain $ selected
        my_loop.addData("crdm_trial_type", "task") #record trial identifier as "task"

        if type(crdm_trial_resp.rt) is list or crdm_trial_resp.rt >= 2 - 0.5:
            delta_time = 0
        else:
            delta_time = max(0, 2 - (crdm_trial_resp.rt + stopped_time))

        if len(key) == 1: #response received from Ss
            if sure_key == 1: #certain option
                #-1 is placeholder for lott_outcome
                earnings.append(("sure", crdm_sure_amt, crdm_img, crdm_lott_top, crdm_lott_bot, -1, crdm_nonzero_side, crdm_domain)) #record info for bonus trial
                my_loop.addData("crdm_choice", 0) #record Ss sure amt choice (int)
                my_loop.addData("crdm_choice2", "sure") #record Ss sure amt choice (str)
                my_loop.addData("crdm_lott", "") #record blank for lottery (int)
                my_loop.addData("crdm_lott2", "") #record blank for lottery (str)
            else: #lottery option
                lott_outcome = random.choices([0,1], weights=[100-int(crdm_lott_p), int(crdm_lott_p)])[0] #outcome of current lottery
                my_loop.addData("crdm_choice", 1) #record Ss lottery choice (int)
                my_loop.addData("crdm_choice2", "lott") #record Ss lottery choice (str)
                if lott_outcome == 1: #winning lottery
                    my_loop.addData("crdm_lott", 1) #record lottery win (int)
                    my_loop.addData("crdm_lott2", "win") #record lottery win (str)
                    if crdm_domain == "gain": #gain domain trial
                        if int(crdm_lott_top) != 0: #top side is winner (non-0 means some money was gained)
                            earnings.append(("lott", crdm_lott_top, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_nonzero_side, crdm_domain)) #record info for bonus trial
                        else: #bottom side is winner
                            earnings.append(("lott", crdm_lott_bot, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_nonzero_side, crdm_domain)) #record info for bonus trial
                    else: #loss domain trial
                        if int(crdm_lott_top) == 0: #top side is winner (0 means no money is lost)
                            earnings.append(("lott", crdm_lott_top, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_nonzero_side, crdm_domain)) #record info for bonus trial
                        else: #bottom side is winner
                            earnings.append(("lott", crdm_lott_bot, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_nonzero_side, crdm_domain)) #record info for bonus trial
                else: #losing lottery
                    my_loop.addData("crdm_lott", 0) #record lottery loss (int)
                    my_loop.addData("crdm_lott2", "lose") #record lottery loss (win)
                    earnings.append(("lott", 0, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_nonzero_side, crdm_domain)) #record info for bonus trial
    ImageComponent crdm_trial_img
      image [set every repeat] = $"images/" + crdm_img
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent crdm_trial_lott_top
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $str("$"+str(format(crdm_lott_top)))
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    TextComponent crdm_trial_lott_bot
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $str("$"+str(format(crdm_lott_bot)))
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    TextComponent crdm_trial_sure_amt
      letterHeight = 0.06
      pos [set every repeat] = crdm_sure_pos
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $str("$"+str(format(crdm_sure_amt)))
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    PolygonComponent GRFX_fix
      fillColor = [0,0,0]
      lineColor = [0,0,0]
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 2
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    PolygonComponent crdm_trial_cue
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, 1.0000, -1.0000
      saveStartStop = False
      shape = circle
      size = (0.04, 0.04)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 2
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    KeyboardComponent crdm_trial_resp
      allowedKeys = '1', '2'
      correctAns = $crdm_sure_resp
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3
      stopVal [duration (s)] = 2
      store = first key
      storeCorrect = True
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  Routine crdm_trials_iti
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    CodeComponent crdm_trials_iti_code
      Code Type = Both
      Begin JS Routine:
        crdm_iti_time = (crdm_iti_list[my_loop.thisIndex] + crdm_delta_time);
        if (!(crdm_trials.thisTrialN == undefined) && (crdm_trials.thisTrialN === 143)) {
            continueRoutine = false;
        }
      Begin Routine:
        crdm_iti_time = crdm_iti_list[my_loop.thisIndex] + crdm_delta_time #variable ITI for non-practice trials

        if crdm_trials.thisTrialN == 143: #final trial (number of trials - 1)
            continueRoutine = False #don't present ITI fixation
      End JS Routine:
        my_loop.addData("crdm_delta_time", crdm_delta_time);
        my_loop.addData("crdm_iti_time", crdm_iti_time);
      End Routine:
        my_loop.addData("crdm_delta_time", crdm_delta_time) #record delta time
        my_loop.addData("crdm_iti_time", crdm_iti_time) #record iti time
    PolygonComponent crdm_trials_iti_poly
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $crdm_iti_time
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  Routine crdm_end
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    CodeComponent crdm_end_code
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        crdm_task_end_text = ""
        crdm_space_text = ""
      Begin Routine:
        crdm_unique_resps = []
        crdm_unique_count = 0
        for i in crdm_task_resps:
            if i not in crdm_unique_resps:
                crdm_unique_count += 1
                crdm_unique_resps.append(i)

        crdm_task_end_text = ""
        crdm_space_text = ""
        #filter for nonresponses
        if len(crdm_task_resps) < 136 or len(crdm_conf_resps) < 136: #95% of 144 CRDM trials
            if len(crdm_task_resps) < 136:
                crdm_task_end_text = "You failed to respond to " + str(144-len(crdm_task_resps)) + " task trials and did not meet the 95% response rate requirement. \n \n The Risk & Ambiguity Task will now close."
            if len(crdm_conf_resps) < 136:
                crdm_task_end_text = "You failed to respond to both parts of " + str(144-len(crdm_conf_resps)) + " trials and did not meet the 95% response rate requirement. \n \n The Risk & Ambiguity Task will now close."
            crdm_space_text = "Press SPACE to end."
            exp_proceed = False
            my_loop.addData("crdm_subReject1", "< 95% resp rate")
            my_loop.addData("crdm_subReject1_nonresps-task", 144-len(crdm_task_resps))
            my_loop.addData("crdm_subReject1_nonresps-conf", 144-len(crdm_conf_resps))
        #filter for single-button responses
        elif crdm_unique_count < 2: #same for each exp
            crdm_task_end_text = "You provided the same response to all " + str(len(crdm_task_resps)) + " trials. \n \n You did not follow task instructions. \n \n The Risk & Ambiguity Task will now close."
            crdm_space_text = "Press SPACE to end."
            exp_proceed = False
            my_loop.addData("crdm_subReject2", "1key response")
            my_loop.addData("crdm_subReject2_key", crdm_task_resps[0])
        #filter for poor performance on CRDM catch trials (10/20 catch trials -- 0.097% of random success on 10 trials)
        #elif sum(crdm_catch_trials) < 10:
            #crdm_task_end_text = "Your performance on the previous trial block demonstrates you did not follow task instructions. \n \n The Risk & Ambiguity Task will now close."
            #crdm_space_text = "Press SPACE to end."
            #exp_proceed = False
            #my_loop.addData("crdm_subReject3", "catch fail")
            #my_loop.addData("crdm_subReject3_fails", 20-sum(crdm_catch_trials))
        #all CRDM task trial criterion are met
        else:
            crdm_task_end_text = "You have completed the Risk & Ambiguity Task!"
            crdm_space_text = "Press SPACE to continue."
    TextComponent crdm_end_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Risk & Ambiguity Task *
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    TextComponent crdm_end_txt_ON
      disabled = True
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $crdm_task_end_text
      wrapWidth = 1.35
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    TextComponent crdm_end_space_ON
      disabled = True
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $crdm_space_text
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    TextComponent crdm_end_txt_OFF
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = You have completed the Risky & Ambiguity Task!
      wrapWidth = 1.35
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    TextComponent crdm_end_space_OFF
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_end_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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
  Routine crdm_pract1_feedback
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    CodeComponent crdm_pract1_feedback_code
      Code Type = Both
      Begin JS Routine:
        if ((crdm_pract1_key === undefined)) {
            crdm_msg1 = "NO RESPONSE";
        } else {
            if (crdm_pract1_sure_key) {
                crdm_msg1 = ("CERTAIN $" + format(crdm_sure_amt1.toString()));
            } else {
                crdm_msg1 = "LOTTERY";
            }
        }
      Begin Routine:
        if len(crdm_pract1_key) == 0: #Ss did not respond
            crdm_msg1 = "NO RESPONSE"
        elif crdm_pract1_sure_key: #Ss chose sure amt
            crdm_msg1 = "CERTAIN $" + str(format(crdm_sure_amt1))
        else: #Ss chose lottery
            crdm_msg1 = "LOTTERY"
    TextComponent crdm_pract1_feedback_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $crdm_msg1
      wrapWidth = 1.5
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  Routine crdm_pract_init_fix
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    PolygonComponent crdm_pract_init_fix_poly
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine crdm_questplus
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    CodeComponent crdm_questplus_JS
      Code Type = JS
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      Begin JS Experiment:
        crdm_sure_pos_qp = [];
        crdm_sure_resp_qp = [];
        crdm_msg_qp = "";
        crdm_pos_qp = [[(- 0.5), 0], [0.5, 0]];
        crdm_resp_qp = ["1", "2"];

        weighted_avg = function(q) {
            var fits = [];
            var weight = 0;
            // q.param_domain, q.posterior
            var i, l;
            l = q.param_domain[0].length;
            while (fits.length < l) {
                fits.push(0);
            }
            for (i = 0; i < q.posterior.length; i++) {
                for (l = 0; l < fits.length; l++) {
                    fits[l] += q.param_domain[i][l] * q.posterior[i];
                }
                weight += q.posterior[i];
            }
            for (l = 0; l < fits.length; l++) {
                fits[l] /= weight;
            }
            return fits;
        }

        // Sqrt(sum(w * (x - wm)^2) / sum(w))
        weighted_sd = function(q) {
            var fits = [];
            var weight = 0;
            var i, l;
            var wm = weighted_avg(q);
            l = q.param_domain[0].length;
            while (fits.length < l) {
                fits.push(0);
            }
            for (i = 0; i < q.posterior.length; i++) {
                for (l = 0; l < fits.length; l++) {
                    fits[l] += q.posterior[i] * Math.pow((q.param_domain[i][l] - wm[l]), 2);
                }
                weight += q.posterior[i];
            }
            for (l = 0; l < fits.length; l++) {
                fits[l] /= weight;
                fits[l] = Math.sqrt(fits[l])
            }
            return fits;
        }

        crdm_value_space = [5, 8, 20, 40, 50];
        crdm_ambiguity_space = [0, 0.24, 0.5, 0.74];
        crdm_probability_space = [0.13, 0.25, 0.38, 0.5, 0.75];
        crdm_value_certain = 5;

        // parameter space
        crdm_alpha_space = arange_round(0.1, 3.1, 0.1);
        crdm_beta_space =  arange_round(-1.3, 1.31, 0.1);
        crdm_gamma_space =  arange_round(0.5, 5.1, 0.5);

        crdm_i = 0;
        crdm_j = 0;
        crdm_k = 0;
        crdm_stim_space = []; // set for gain domain
        for (crdm_i = 0; crdm_i < crdm_value_space.length; crdm_i++) {
            for (crdm_j = 0; crdm_j < crdm_ambiguity_space.length; crdm_j++) {
                for (crdm_k = 0; crdm_k < crdm_probability_space.length; crdm_k++) {
                    if (!crdm_ambiguity_space[crdm_j] || crdm_probability_space[crdm_k] == 0.5) {
                        crdm_stim_space.push([crdm_value_space[crdm_i], crdm_ambiguity_space[crdm_j], crdm_probability_space[crdm_k], crdm_value_certain]);
                    }
                }
            }
        }
        crdm_gain_stim_space = crdm_stim_space;

        crdm_stim_space = []; // reset for loss domain
        for (crdm_i = 0; crdm_i < crdm_value_space.length; crdm_i++) {
            for (crdm_j = 0; crdm_j < crdm_ambiguity_space.length; crdm_j++) {
                for (crdm_k = 0; crdm_k < crdm_probability_space.length; crdm_k++) {
                    if (!crdm_ambiguity_space[crdm_j] || crdm_probability_space[crdm_k] == 0.5) {
                        crdm_stim_space.push([-crdm_value_space[crdm_i], crdm_ambiguity_space[crdm_j], crdm_probability_space[crdm_k], -crdm_value_certain]);
                    }
                }
            }
        }
        crdm_loss_stim_space = crdm_stim_space;

        crdm_params = [crdm_alpha_space, crdm_beta_space, crdm_gamma_space];
        crdm_response = true;

        // risk and ambiguity model
        function SV_option_RA(stimulus_values, params) {
            var prob;
            var objective_value = stimulus_values[0];
            var ambiguity = stimulus_values[1];
            var probability = stimulus_values[2];
            var value_certain = stimulus_values[3];
            var alpha_subject_risk_aversion = params[0];
            var beta_ambiguity_aversion = params[1];
            var sv_reward, sv_null, tmp;
            sv_reward = Math.sign(objective_value) * (probability - beta_ambiguity_aversion * (ambiguity/2)) * Math.pow(Math.abs(objective_value), alpha_subject_risk_aversion);
            sv_null = Math.sign(objective_value) * Math.pow(Math.abs(value_certain), alpha_subject_risk_aversion);
            var gamma = params[2];
            prob = 1. / (1 + Math.exp(-gamma * (sv_reward - sv_null)));
            return prob;
        }

        // subjective value decision
        function draw_from(stimulus_value, params, func) {
            var prob = func(stimulus_value, params);
            if (Math.random() < prob)
                return 1;
            else
                return 0;
        }

        // # uses contrast_idx instead of contrast for efficiency
        crdm_contrast_idx_gain = parseInt(Math.random() * crdm_stim_space.length);
        crdm_contrast_idx_loss = parseInt(Math.random() * crdm_stim_space.length);

        crdm_func = SV_option_RA;
        crdm_q_gain = new QuestPlus(crdm_stim_space, crdm_params, crdm_func);
        crdm_q_loss = new QuestPlus(crdm_stim_space, crdm_params, crdm_func);
      Begin JS Routine:
        my_loop = eval(crdm_questplus_loop_name);
        crdm_idx_qp = random.randint(0, 1);
        crdm_sure_pos_qp = crdm_pos_qp[crdm_idx_qp];
        crdm_sure_resp_qp = crdm_resp_qp[crdm_idx_qp];

        if (crdm_domain_type == 'gain') { //GAINS - get ambiguity, probability, and lott top & bottom
            crdm_sure_amt_qp = crdm_gain_stim_space[crdm_contrast_idx_gain][3];
            crdm_ambiguity = crdm_gain_stim_space[crdm_contrast_idx_gain][1];
            if (!crdm_ambiguity) {
                crdm_probability = crdm_gain_stim_space[crdm_contrast_idx_gain][2];
            } else {
                crdm_probability = 0.5;
            }
            if (crdm_nonzero_side == 'top') {
                crdm_lott_top_qp = crdm_gain_stim_space[crdm_contrast_idx_gain][0];
                crdm_lott_bot_qp = 0;
            } else {
                crdm_lott_top_qp = 0;
                crdm_lott_bot_qp = crdm_gain_stim_space[crdm_contrast_idx_gain][0];
            }
        } else { //LOSSES - get ambiguity, probability, and lott top & bottom
            crdm_sure_amt_qp = crdm_loss_stim_space[crdm_contrast_idx_loss][3];
            crdm_ambiguity = crdm_loss_stim_space[crdm_contrast_idx_loss][1];
            if (!crdm_ambiguity) {
                crdm_probability = crdm_loss_stim_space[crdm_contrast_idx_loss][2];
            } else {
                crdm_probability = 0.5;
            }
            if (crdm_nonzero_side == 'top') {
                crdm_lott_top_qp = crdm_loss_stim_space[crdm_contrast_idx_loss][0];
                crdm_lott_bot_qp = 0;
            } else {
                crdm_lott_top_qp = 0;
                crdm_lott_bot_qp = crdm_loss_stim_space[crdm_contrast_idx_loss][0];
            }
        }

        if (crdm_ambiguity) { //set current image
            crdm_img_qp = 'ambig_' + parseInt(crdm_ambiguity * 100) + '.bmp';
        } else {
            if (crdm_lott_top_qp != 0) {
                crdm_img_qp = 'risk_red_' + parseInt(crdm_probability * 100) + '.bmp'
            } else {
                crdm_img_qp = 'risk_blue_' + parseInt(crdm_probability * 100) + '.bmp'
            }
        }
      End JS Routine:
        crdm_qp_key = crdm_questplus_trial_resp.keys;
        crdm_qp_sure_key = crdm_questplus_trial_resp.corr;

        crdm_response = !crdm_qp_sure_key;
        if (crdm_domain_type == 'gain'){
            // update posterior
            crdm_q_gain.update(crdm_contrast_idx_gain, crdm_response);
            // find next contrast index
            crdm_contrast_idx_gain = crdm_q_gain.next_contrast();
            crdm_post_mean = weighted_avg(crdm_q_gain);
            crdm_post_sd = weighted_sd(crdm_q_gain);
        } else {
            crdm_q_loss.update(crdm_contrast_idx_loss, crdm_response);
            crdm_contrast_idx_loss = crdm_q_loss.next_contrast();
            crdm_post_mean = weighted_avg(crdm_q_loss);
            crdm_post_sd = weighted_sd(crdm_q_loss);
        }

        my_loop.addData("crdm_trial_type", "questplus");
        my_loop.addData("crdm_response", crdm_response);
        my_loop.addData("crdm_mean_alpha", crdm_post_mean[0]);
        my_loop.addData("crdm_mean_beta", crdm_post_mean[1]);
        my_loop.addData("crdm_mean_gamma", crdm_post_mean[2]);
        my_loop.addData("crdm_sd_alpha", crdm_post_sd[0]);
        my_loop.addData("crdm_sd_beta", crdm_post_sd[1]);
        my_loop.addData("crdm_sd_gamma", crdm_post_sd[2]);
        my_loop.addData("crdm_lott_reward", crdm_lott_top_qp + crdm_lott_bot_qp);
        my_loop.addData("crdm_lott_prob", Number.parseInt((crdm_probability * 100)));
        my_loop.addData("crdm_ambig_level", Number.parseInt((crdm_ambiguity * 100)));
    CodeComponent crdm_questplus_py
      Code Type = Py
      disabled = True
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      Begin Experiment:
        #position of certain amount option
        sure_pos = []
        sure_resp = []
        crdm_msg = ""

        #stimuli positions and respective responses
        pos = [[-0.5, 0], [0.5, 0]] #left/right screen locations
        resp = ["1", "2"] #1 = left, 2 = right
      Begin Routine:
        my_loop = eval("questplus_trials")

        #random index for certain outcome position and response
        idx = random.randint(0,1)
        sure_pos = pos[idx]
        sure_resp = resp[idx]
        ado_lott_top = ""
        ado_lott_bot = ""
        ado_img = ""

        #setting important parameters based on domain (gain/loss)
        if trial_type == "gain":
            log_lik, ent, log_post, sets = g_log_lik, g_ent, g_log_post, g_sets
            mutual_info = rg.get_MI(log_lik, ent, log_post) #ricardo_gain.py
        else: #losses
            log_lik, ent, log_post, sets = l_log_lik, l_ent, l_log_post, l_sets
            mutual_info = rl.get_MI(log_lik, ent, log_post) #ricardo_loss.py


        # GET_DESIGN based on maximum Mutual Information
        idx_design = np.argmax(mutual_info)
        cur_design = sets.choice.iloc[idx_design].to_dict()

        if nonzero_side == "top": #red side of lotto
            ado_lott_top = cur_design["value_reward"] #nonzero value on top (red)
            ado_lott_bot = 0
            if cur_design["amb_level"] == 0: #risk trial
                ado_img = "risk_red_{0}.bmp".format(int(cur_design["p_reward"]*100))
            else: #ambiguity trial
                ado_img = "ambig_{0}.bmp".format(int(cur_design["amb_level"]*100))
        else: #blue side of lotto
            ado_lott_top = 0
            ado_lott_bot = cur_design["value_reward"] #nonzero value on bottom (blue)
            if cur_design["amb_level"] == 0: #risk trial
                ado_img = "risk_blue_{0}.bmp".format(int(cur_design["p_reward"]*100))
            else: #ambiguity trial
                ado_img = "ambig_{0}.bmp".format(int(cur_design["amb_level"]*100))
        ado_sure_amt = cur_design["value_null"] #sure amount
      End Routine:
        qp_key = crdm_questplus_trial_resp.keys
        qp_sure_key = crdm_questplus_trial_resp.corr
        my_loop.addData("crdm_trial_type", "questplus")

        cur_response = not qp_sure_key #flips .corr convention
        if trial_type == "gain": #gain -- ricardo_gain.py
            mutual_info, log_post = rg.update_MI(sets.choice, sets.response, cur_design, cur_response, log_lik, ent, log_post)
            post_mean = rg.get_post_mean(np.exp(log_post), sets.param)
            post_sd = rg.get_post_sd(np.exp(log_post), sets.param)
            g_log_lik, g_ent, g_log_post, g_sets = log_lik, ent, log_post, sets
        else: #loss -- ricardo_loss.py
            mutual_info, log_post = rl.update_MI(sets.choice, sets.response, cur_design, cur_response, log_lik, ent, log_post)
            post_mean = rl.get_post_mean(np.exp(log_post), sets.param)
            post_sd = rl.get_post_sd(np.exp(log_post), sets.param)
            l_log_lik, l_ent, l_log_post, l_sets = log_lik, ent, log_post, sets

        my_loop.addData("response", cur_response)
        my_loop.addData('mean_alpha', post_mean[0])
        my_loop.addData('mean_beta', post_mean[1])
        my_loop.addData('mean_gamma', post_mean[2])
        my_loop.addData('sd_alpha', post_sd[0])
        my_loop.addData('sd_beta', post_sd[1])
        my_loop.addData('sd_gamma', post_sd[2])
        my_loop.addData("lott_reward", cur_design["value_reward"])
        my_loop.addData("lott_prob", int(cur_design["p_reward"]*100))
        my_loop.addData("ambig_level", int(cur_design["amb_level"]*100))
    ImageComponent crdm_questplus_img
      image [set every repeat] = $"images/" + crdm_img_qp
      saveStartStop = False
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent crdm_questplus_trial_lott_top_txt
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $str("$"+str(format(crdm_lott_top_qp)))
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    TextComponent crdm_questplus_trial_lott_bot_txt
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $str("$"+str(format(crdm_lott_bot_qp)))
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    TextComponent crdm_questplus_trial_sure_amt_txt
      letterHeight = 0.06
      pos [set every repeat] = crdm_sure_pos_qp
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text [set every repeat]:
        $str("$"+str(format(crdm_sure_amt_qp)))
    PolygonComponent GRFX_fix3
      fillColor = [0,0,0]
      lineColor = [0,0,0]
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 2
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    PolygonComponent crdm_questplus_trial_cue
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, 1.0000, -1.0000
      saveStartStop = False
      shape = circle
      size = (0.04, 0.04)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 2
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    KeyboardComponent crdm_questplus_trial_resp
      allowedKeys = '1', '2'
      correctAns = $crdm_sure_resp_qp
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3
      stopVal [duration (s)] = 2
      store = first key
      storeCorrect = True
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  Routine crdm_qp_feedback
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    CodeComponent crdm_qp_FB_code
      Code Type = Both
      Begin JS Routine:
        if ((crdm_qp_key === undefined)) {
            crdm_msg_qp = "NO RESPONSE";
        } else {
            if (crdm_qp_sure_key) {
                crdm_msg_qp  = ("CERTAIN $" + format(crdm_sure_amt_qp.toString()));
            } else {
                crdm_msg_qp  = "LOTTERY";
            }
        }
      Begin Routine:
        if len(crdm_qp_key) == 0: #Ss did not respond
            crdm_msg_qp  = "NO RESPONSE"
        elif crdm_qp_sure_key: #Ss chose sure amt
            crdm_msg_qp  = "CERTAIN $" + str(format(cur_design["value_null"]))
        else: #Ss chose lottery
            crdm_msg_qp  = "LOTTERY"
    TextComponent crdm_qp_FB_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $crdm_msg_qp
      wrapWidth = 1.5
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  Routine crdm_qp_instr
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    TextComponent crdm_qp_instr_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Risk & Ambiguity Task *
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    TextComponent crdm_qp_instr_txt
      letterHeight = 0.04
      pos = (0, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        Now that you've practiced, we'll begin the first section of the task.

        You will have 3 seconds to consider and 2 seconds to respond for each trial. Please make your choice when the green circle appears on the screen.
    TextComponent crdm_qp_instr_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to begin.
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    KeyboardComponent crdm_qp_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_pract2_instr
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    TextComponent crdm_pract2_instr_name_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Risk & Ambiguity Task *
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    TextComponent crdm_pract2_instr_txt
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        In this second section, you will now be asked to provide a confidence rating after your choice.

        When the green circle appears, indicate your decision by pressing YELLOW for the left option and GREEN for the right option. Next, you will rate your choice confidence. Please be sure to answer both the task and confidence questions!

        Let's practice!
    TextComponent crdm_pract2_instr_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to begin.
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    KeyboardComponent crdm_pract2_instr_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_pract1_trial
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    CodeComponent crdm_pract1_trial_code
      Code Type = Both
      Begin Experiment:
        #position of certain amount option
        crdm_sure_pos1 = []
        crdm_sure_resp1 = []
        crdm_crdm_msg1 = ""

        #stimuli positions and respective responses
        #left/right screen locations
        crdm_pos1 = [[-0.5, 0], [0.5, 0]]
        crdm_resp1 = ["1", "2"] #1 = left, 2 = right
      Begin JS Experiment:
        crdm_sure_pos1 = [];
        crdm_sure_resp1 = [];
        crdm_msg1 = "";
        crdm_pos1 = [[(- 0.5), 0], [0.5, 0]];
        crdm_resp1 = ["1", "2"];
      Begin JS Routine:
        my_loop = eval(crdm_practice_loop1_name);

        crdm_idx1 = random.randint(0, 1);
        crdm_sure_pos1 = crdm_pos1[crdm_idx1];
        crdm_sure_resp1 = crdm_resp1[crdm_idx1];
      Begin Routine:
        my_loop = eval(crdm_practice_loop1_name)

        #random index for certain outcome position and response
        crdm_idx1 = random.randint(0,1)
        crdm_sure_pos1 = crdm_pos1[crdm_idx1]
        crdm_sure_resp1 = crdm_resp1[crdm_idx1]
      End JS Routine:
        crdm_pract1_key = crdm_pract1_trial_resp.keys;
        crdm_pract1_sure_key = crdm_pract1_trial_resp.corr;
        my_loop.addData("crdm_trial_type", "practice1");
      End Routine:
        crdm_pract1_key = crdm_pract1_trial_resp.keys
        crdm_pract1_sure_key = crdm_pract1_trial_resp.corr

        my_loop.addData("crdm_trial_type", "practice1")
    ImageComponent crdm_pract1_trial_img
      image [set every repeat] = $"images/" + crdm_img1
      saveStartStop = False
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent crdm_pract1_trial_lott_top_txt
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $str("$"+str(format(crdm_lott_top1)))
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    TextComponent crdm_pract1_trial_lott_bot_txt
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $str("$"+str(format(crdm_lott_bot1)))
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    TextComponent crdm_pract1_trial_sure_amt_txt
      letterHeight = 0.06
      pos [set every repeat] = crdm_sure_pos1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text [set every repeat]:
        $str("$"+str(format(crdm_sure_amt1)))
    PolygonComponent GRFX_fix4
      fillColor = [0,0,0]
      lineColor = [0,0,0]
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 2
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    PolygonComponent crdm_pract1_trial_cue
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, 1.0000, -1.0000
      saveStartStop = False
      shape = circle
      size = (0.04, 0.04)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 2
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    KeyboardComponent crdm_pract1_trial_resp
      allowedKeys = '1', '2'
      correctAns = $crdm_sure_resp1
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3
      stopVal [duration (s)] = 2
      store = first key
      storeCorrect = True
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  Routine crdm_schedule_gen
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    CodeComponent crdm_schedule_gen_JS
      Code Type = JS
      Begin JS Routine:
        //# because Pavlovia doesn't auto-convert append or extend to push,
        //#  make the same functions work for any javascript array by affecting the prototype
        Array.prototype.append = Array.prototype.push
        Array.prototype.extend = function(arr){this.push(...arr)};

        //# avoid using the "function name(){}" syntax
        //#  to account for Pavlovia's scope problems.

        range = function(start_stop, post_stop, step=1) {
            //# create a list sequence with a starting point, stopping point, and step size
            //#  the step size is assumed 1 if not provided
            //#  the first value is considered the stopping point if the second value is not given,
            //#   in which case the starting point is assumed to be 0.
            //#  post_stop is the non-inclusive end point.
            var arr = [];
            if (post_stop != undefined) {
                for (var i = start_stop; i < post_stop; i += step) {
                    arr.push(i);
                }
            } else {
                for (var i = 0; i < start_stop; i += step) {
                    arr.push(i);
                }
            }
            return arr;
        }

        arange = function(start_stop, post_stop, step=1, rounding=2) {
            //# same as range(), but with rounding built-in
            //# create a list sequence with a starting point, stopping point, and step size
            //#  the step size is assumed 1 if not provided
            //#  the first value is considered the stopping point if the second value is not given,
            //#   in which case the starting point is assumed to be 0.
            //#  post_stop is the non-inclusive end point.
            var arr = [];
            if (post_stop != undefined) {
                if (post_stop < start_stop) {
                    for (var i = start_stop; i > post_stop; i += step) {
                        arr.push(round(i, rounding))
                    }
                } else {
                    for (var i = start_stop; i < post_stop; i += step) {
                        arr.push(round(i, rounding))
                    }
                }
            } else {
                if (start_stop < 0) {
                    for (var i = 0; i > start_stop; i += step) {
                        arr.push(round(i, rounding))
                    }
                } else {
                    for (var i = 0; i < start_stop; i += step) {
                        arr.push(round(i, rounding))
                    }
                }
            }
            return arr;
        }

        clone = function(arr) {
            //# recursive function to deep copy arrays and dictionaries
            var loops, tmp;
            //# see if it is an array
            //#  check a couple of things to try to avoid objects with these keys
            if (Array.isArray(arr)) {
                loops = arr;
                tmp = [];
            } else {
                loops = Object.keys(arr);
                tmp = {};
            }
            loops.forEach(function(val) {
                var value;
                //# if the looped items are the array, push() to a list
                if (loops === arr) {
                    value = val;
                    if (typeof(value) == "object") {
                        //# if the subelement is another complex object,
                        //#  then clone it as well.
                        tmp.push(clone(value));
                    } else {
                        tmp.push(value);
                    }
                } else { //# if the looped items are the dictionary
                         //#  add them with the key
                    value = arr[val];
                    if (typeof(value) == "object") {
                        //# if the subelement is another complex object,
                        //#  then clone it as well.
                        tmp[val] = clone(value);
                    } else {
                        tmp[val] = value;
                    }
                }
            })
            return tmp;
        }

        sum = function(arr){return arr.reduce((partialSum, a) => partialSum + a, 0)}


        random = {
            //# contains useful random number generation functions
            "random" : function(start_stop=1, post_stop=undefined, count=1) {
                var results = [];
                range(count).forEach(function() {
                    if (post_stop != undefined) {
                        if (post_stop < start_stop) {
                            var tmp = post_stop;
                            post_stop = start_stop;
                            start_stop = tmp;
                        }
                        results.push((start_stop + Math.random() * (post_stop - start_stop)));
                    } else {
                        //# if post_stop is not defined, start_stop is the non-inclusive max value.
                        results.push((Math.random() * start_stop));
                    }
                });
                if (count == 1)
                    return results[0];
                    return results;
            },

            "randint" : function(start_stop, post_stop, count=1) {
                var results = [];
                range(count).forEach(function() {
                    //# Math.random() never gives exactly 1, so it
                    //#  never reaches the provided max value.
                    if (post_stop != undefined) {
                        if (post_stop < start_stop) {
                            var tmp = post_stop;
                            post_stop = start_stop;
                            start_stop = tmp;
                        }
                        results.push(parseInt(start_stop + Math.random() * (post_stop - start_stop)));
                    } else {
                        //# if post_stop is not defined, start_stop is non-inclusive max value
                        results.push(parseInt(Math.random() * start_stop));
                    }
                });
                if (count == 1)
                    return results[0];
                    return results;
            },

            "choice" : function(arr, count=1, with_replacement=true) {
                var results = [];
                if (with_replacement) {
                    range(count).forEach(function() {
                        results.push(arr[random.randint(arr.length)]);
                    });
                } else {
                    //# make shallow copy to choose from.
                    //#  you can always clone returned result if you want unique copies,
                    //#  and it makes no difference for arrays of primitives
                    //#  (like numeric indices or string keys).
                    var tmp = [...arr];
                    range(count).forEach(function() {
                        if (tmp.length == 0)
                            //# refill array
                            tmp = [...arr];
                            results.push(tmp.splice(random.randint(tmp.length), 1));
                    });
                }
                if (count == 1)
                    return results[0];
                    return results;
            }
        }



        crdm_fit_gain = weighted_avg(crdm_q_gain) //# parameters for gains
        crdm_fit_loss = weighted_avg(crdm_q_loss) //# parameters for losses

        //# global variables
        alpha_gain = crdm_fit_gain[0];
        alpha_loss = crdm_fit_loss[0];
        beta_gain = crdm_fit_gain[1];
        beta_loss = crdm_fit_loss[1];
        prob = 0.5;
        amb = 0;
        crdm_steps = 4;
        //# domain: gain = 1, loss = -1

        append_trial = function(trials, safe_sv, lott_sv, lott, safe, prob, amb, sv_half, domain) {
            //# appends trial info for presentation and output
            trials["crdm_safe_sv"].append(safe_sv);
            trials["crdm_lott_sv"].append(safe_sv);
            trials["crdm_lott"].append(lott);
            trials["crdm_sure_amt"].append(safe);
            trials["crdm_lott_p"].append(prob);
            trials["crdm_amb_lev"].append(amb);
            trials["crdm_delta_sv"].append(lott_sv - safe_sv);
            trials["crdm_domain"].append(domain);
        }

        lottery2sv = function(objective_value, alpha_risk_aversion, beta_ambiguity_aversion, probability, ambiguity) {
            //# converts lottery option value from money space --> subjective value space
            //# domain considered where function is called
            return Math.sign(objective_value) * (probability - beta_ambiguity_aversion * (ambiguity/2))
                   * Math.pow(Math.abs(objective_value), alpha_risk_aversion);
        }

        round2fiddy = function(number) {
            //# rounding all money values to nearest $0.50
            return Math.round(number * 2)/2;
        }

        safe2sv = function(subjective_value, alpha) { //# deprecated
            //# converts safe option value from money space --> subjective value space
            return Math.sign(subjective_value) * Math.pow(Math.abs(subjective_value), alpha);
        }

        sort_it = function(arr) {
            //# sort ascending (used for SVs)
            arr.sort(function(a, b){return a - b});
        }

        sv2money = function(subjective_value, domain, alpha, beta, prob, amb) {
            //# based on whether you provide beta, converts each value in the
            //#  subjective value (safe & lottery) range --> money spaces
            var money;
            if (beta === undefined) { //# beta isn't used for safe money
                //# compute safe money using inverse of SV formula
                //#  gain - money(V) = 1*SV**1/alpha
                //#  loss - money(V) = -1*SV**1/alpha
                money = round2fiddy(domain * Math.pow(Math.abs(subjective_value), 1/alpha));
            } else {
                //# compute lottery money using inverse of SV formula
                //#  gain - money(V) = 1*(SV/P-B*A/2)**1/alpha
                //#  loss - money(V) = -1*(SV/P-B*A/2)**1/alpha
                money = round2fiddy(domain * Math.pow(Math.abs(subjective_value)/(prob - beta * amb/2), 1/alpha));
            }
            //# constrains min and max lottery $ and ensure correct sign for gain/loss
            money = domain * Math.min(50, Math.max(0.5, Math.abs(money)));
            return money
        }

        make_sample_sv_ranges = function(domain, alpha, beta, prob, amb, steps) {
            //# calculates SVdeltas and corresponding monetary values
            var sv_max = domain * lottery2sv(50, alpha, beta, prob, amb); //# maximum possible lottery value ($ --> SV space)
            var sv_min = 0; //# domain * safe2sv(0.5, alpha); //#minimum possible lottery value ($ --> SV space)
            var sv_half = sv_max/2; //# SV of trial halfway between 0 and max lottery gain (true center)
            var step_size = (sv_max - sv_min)/(2 * steps - 1);
            var space = arange(sv_min, sv_max + step_size/2, step_size);
            return [space, sv_half];
        }

        crdm_trials_dict = {"crdm_safe_sv":[], "crdm_lott_sv":[], "crdm_lott":[], "crdm_sure_amt":[], //# dict for trial variables
                            "crdm_lott_p":[], "crdm_amb_lev":[], "crdm_delta_sv":[], "crdm_domain":[]};

        generate_trials = function(trials, domain, alpha, beta, steps) {
            //# creates trial schedule for each domain (gain/loss)
            var amb_space = [0.24, 0.5, 0.74]; //# possible ambiguity values
            var prob_space = [0.13, 0.25, 0.38, 0.5, 0.75]; //# possible probability values
            var trials_per = 9; //# number of trials per unique prob/amb option
            var choice_idxs = [0,1,2,3,3.5,4,5,6,7];
            var delta_idx = range(8); //# index of trials_remaining_per_sv_delta array

            prob_space.forEach(function(prob) {
                //# non-ambiguity trials
                var tmp = make_sample_sv_ranges(domain, alpha, beta, prob, 0, steps);
                var svs = tmp[0]; //# get list of SV quadrants
                var sv_half = tmp[1]; //# get SV_half
                range(trials_per).forEach(function(_, tidx) { //# for each of 9 trials per prob
                    var choice_idx = choice_idxs[tidx]; //# current sample index
                    if (choice_idx != parseInt(choice_idx)) { //# if not an integer
                        var inty = parseInt(choice_idx); //# turn it into integer
                        choice_idx = random.randint(inty, inty + 2); //# randomly sample within two steps
                    }
                    var subspace_sv = svs[choice_idx]; //# specific random SV for curr quad
                    var lott = sv2money(subspace_sv, domain, alpha, beta, prob, 0); //# specific lottery $ for curr quad
                    var safe = sv2money(sv_half, domain, alpha); //# specific safe $ for curr quad
                    append_trial(trials, sv_half, subspace_sv, lott, safe, prob, 0, sv_half, domain); //# save to trials dict
                });

            });

            amb_space.forEach(function(amb) {
                //# ambiguity trials
                var tmp = make_sample_sv_ranges(domain, alpha, beta, 0.5, amb, steps);
                var svs = tmp[0]; //# get list of SV quadrants
                var sv_half = tmp[1]; //# get SV_half
                range(trials_per).forEach(function(_, tidx) { //# for each of 9 trials per amb
                    var choice_idx = choice_idxs[tidx]; //# current sample index
                    if (choice_idx != parseInt(choice_idx)) { //# if not an integer
                        var inty = parseInt(choice_idx); //# turn it into integer
                        choice_idx = random.randint(inty, inty + 2); //# randomly sample within two steps
                    }
                    var subspace_sv = svs[choice_idx]; //# specific random SV for curr quad
                    var lott = sv2money(subspace_sv, domain, alpha, beta, 0.5, amb); //# specific lottery $ for curr quad
                    var safe = sv2money(sv_half, domain, alpha); //# specific safe $ for curr quad
                    append_trial(trials, sv_half, subspace_sv, lott, safe, 0.5, amb, sv_half, domain); //# save to trials dict
                });

            });
        }

        //# generate schedule for each domain
        generate_trials(crdm_trials_dict, 1, alpha_gain, beta_gain, crdm_steps); //# gain trials
        generate_trials(crdm_trials_dict, -1, alpha_loss, beta_loss, crdm_steps); //# loss trials
    CodeComponent crdm_ricardo_gen_JS
      Code Type = Py
      disabled = True
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      Begin Routine:
        alpha_pos, beta_pos = post_mean_gain[0], post_mean_gain[1] #parameters for gains
        alpha_neg, beta_neg = post_mean_loss[0], post_mean_loss[1] #parameters for losses

        #important variables
        p_options = [0.13, 0.25, 0.38, 0.5, 0.75] #possible probability values (lott)
        amb_options = [0.24, 0.5, 0.74] #possible portions of probability obscured (lott)
        amb_prob = 0.5 #probability for all ambiguity trials
        A_null = 0.0 #zero ambiguity
        Vmax = 50.0 #maximum possible payment
        Vmin = -50.0 #minimum possible payment

        #create an empty dictionary for trials info
        empty_trials = {'category': [],
                        'p_reward': [],
                        'ambiguity': [],
                        'value_reward': [],
                        'SV_reward': [],
                        'value_safe': [],
                        'SV_safe': []}
        ordered_keys = empty_trials.keys() # used to organize dict by keys


        ###helper functions
        def flatten(l):
            flat_list = []
            for sublist in l:
                for item in sublist:
                    flat_list = flat_list + [item]
            return flat_list

        def order_keys(dict,
                       keys):
            ordered_dict = {}
            for k in keys:
                if k in dict.keys():
                    ordered_dict[k] = dict[k]
            return ordered_dict

        def round_number(number):
            number_to_50 = round(number * 2) / 2
            if number_to_50 == 0:
                return 0.50
            else:
                return number_to_50

        def round_to_50(dict):
            cols = ['value_safe', 'value_reward']
            for c in cols:
                rounded_col = []
                for v in dict[c]:
                    rounded_col = rounded_col + [round_number(v)]
                dict[c] = rounded_col
            return dict

        def value_repeat(value,length):
            list_repeat = []
            for i in range(length):
                list_repeat = list_repeat + [value]
            return list_repeat

        def dict_merge(list_dict):
            merged_dict = list_dict[0].copy()
            for d in list_dict[1:]:
                for key in d:
                    value = d[key]
                    merged_dict[key] = merged_dict[key] + value
            return merged_dict

        ###########FUNCTIONS############


        def get_extr_rows(p_options,
                          domain='gain'):
            #creates extreme positive gains and losses
            extr = empty_trials.copy()
            category = 'Extr_pos' if domain == 'gain' else 'Extr_neg'
            V = value_repeat(Vmax, len(p_options)) #list of values with same length as p_options
            if domain == 'loss':
                    V = value_repeat(Vmin, len(p_options))
            extr = {'category': value_repeat(category, len(p_options)),
                    'p_reward': p_options,
                    'ambiguity': value_repeat(0.0, len(p_options)),
                    'value_reward': V}
            return extr


        def add_ambig(trials,
                      amb_options):
            #adds ambiguity trials
            amb_prob = 0.5
            V = value_repeat(trials['value_reward'][0], len(amb_options))
            amb_trials = {'p_reward': value_repeat(amb_prob, len(amb_options)),
                          'value_reward': V,
                          'ambiguity': amb_options}
            final_dict = {}
            for k in set(trials) & set(amb_trials):
                final_dict[k] = trials[k] + amb_trials[k]
            final_dict['category'] = value_repeat(trials['category'][0], len(final_dict['value_reward'][:]))
            return final_dict


        def add_SV(trials,
                   alpha,
                   beta,
                   domain='gain'):
            #adds subjective value (SV) given Ss alpha and beta
            Amp = 1.0
            if domain == 'loss':
                  Amp = -1.0
            sv_reward = []
            for idx in range(len(trials['p_reward'])):
                p = trials['p_reward'][idx]
                v = trials['value_reward'][idx]
                A = trials['ambiguity'][idx]
                sv_reward = sv_reward + [(p - (beta * A / 2)) * (Amp * abs(v)**alpha)]
            trials['SV_reward'] = sv_reward
            return trials


        def add_Vsafe(trials,
                      alpha,
                      beta,
                      domain='gain'):
            #adds Vsafe and its SV
            Amp = 1.0
            if domain == 'loss':
                Amp = -1.0
            sv_safe = []
            value_safe = []
            for sv in trials['SV_reward']:
                sv_safe = sv_safe + [sv/2]
                value_safe = value_safe + [Amp * (abs(sv))**(1/alpha)]
            trials['SV_safe'] = sv_safe
            trials['value_safe'] = value_safe
            return trials


        def get_SE_trials (trials,
                           alpha,
                           beta,
                           domain='gain'):
            #create trials of Subjective Equality (SE)
            SE_trials = {}
            SE_trials['category'] = value_repeat('SE_pos', len(trials['SV_safe']))
            Amp = 1.0
            if domain == 'loss':
                Amp = -1.0
                SE_trials['category'] = value_repeat('SE_neg', len(trials['SV_safe']))
            SE_trials['p_reward'] = trials['p_reward']
            SE_trials['ambiguity'] = trials['ambiguity']
            SE_trials['SV_safe'] = trials['SV_safe']
            sv_reward = []
            value_safe = []
            value_reward = []
            for idx in range(len(trials['SV_reward'])):
                svr = trials['SV_reward'][idx]
                sv_reward = sv_reward + [svr / 2]
                svf = trials['SV_safe'][idx]
                value_safe = value_safe + [Amp * (abs(svf))**(1/alpha)]
                p = trials['p_reward'][idx]
                A = trials['ambiguity'][idx]
                value_reward = value_reward + [Amp * (abs(svf) / ((p) - (beta * A / 2)))**(1/alpha)]
            SE_trials['SV_reward'] = sv_reward
            SE_trials['value_safe'] = value_safe
            SE_trials['value_reward'] = value_reward
            return SE_trials


        def get_cent_SE_trials(SE_trials,
                               alpha,
                               beta,
                               domain = 'gain'):
            cent_SE = {}
            cent_SE_trial_plus2 = SE_trials
            cent_SE_trial_minus2 = SE_trials
            value_reward_plus2 = []
            value_reward_minus2 = []
            for idx in range(len(cent_SE_trial_plus2['value_reward'])):
                value_reward = cent_SE_trial_plus2['value_reward'][idx]
                value_reward_plus2 = value_reward_plus2 + [value_reward + 2.0]
                value_reward_minus2 = value_reward_minus2 + [value_reward - 2.0]
            cent_SE_trial_plus2['value_reward'] = value_reward_plus2
            cent_SE_trial_minus2['value_reward'] = value_reward_minus2
            cent_SE = dict_merge([SE_trials, cent_SE_trial_plus2, cent_SE_trial_minus2]) #merge dictionaries while keeping values in list
            Amp = 1.0
            cent_SE['category'] = value_repeat('Cent_SE_pos', len(cent_SE['value_reward']))
            if domain == 'loss':
                Amp = -1.0
                cent_SE['category'] = value_repeat('Cent_SE_neg', len(cent_SE['value_reward']))
            sv_reward = []
            for idx in range(len(cent_SE['p_reward'])):
                p = cent_SE['p_reward'][idx]
                A = cent_SE['ambiguity'][idx]
                v = cent_SE['value_reward'][idx]
                sv_reward = sv_reward + [(p-beta * A / 2) * Amp * abs(v)**alpha]
            cent_SE['SV_reward'] = sv_reward
            return cent_SE


        def get_interm_trials(rows_extr,
                              alpha,
                              beta,
                              num_steps=2,
                              domain='gain'):
            full_int = {}
            SV_step = []
            for idx in range(len(rows_extr['SV_reward'])):
                reward = rows_extr['SV_reward'][idx]
                safe = rows_extr['SV_safe'][idx]
                SV_step = SV_step + [(reward-safe) / (num_steps + 1)]
            list_x = []
            for i in range(-num_steps - 1, num_steps + 1):
                if i != 0:
                    list_x = list_x + [i]
            list_dict = []
            for x in list_x:
                interm = {}
                Amp = 1.0
                category = 'Int_pos'
                if domain == 'loss':
                    Amp = -1.0
                    category = 'Int'
                if x == -num_steps - 1:
                    category = 'Zero_Reward'
                interm['category'] = value_repeat(category, len(rows_extr['category']))
                interm['p_reward'] = rows_extr['p_reward']
                interm['ambiguity'] = rows_extr['ambiguity']
                sv_reward = []
                for idx in range(len(SV_step)):
                    safe = rows_extr['SV_safe'][idx]
                    step = SV_step[idx]
                    sv_reward = sv_reward + [safe + x * step]
                interm['SV_reward'] = sv_reward
                interm['value_safe'] = rows_extr['value_safe']
                interm['SV_safe'] = rows_extr['SV_safe']

                value_reward = []
                for idx in range(len(interm['SV_reward'])):
                    sv = interm['SV_reward'][idx]
                    p = interm['p_reward'][idx]
                    A = interm['ambiguity'][idx]
                    value_reward = value_reward + [Amp * (abs(sv) / ((p) - (beta * A / 2)))**(1/alpha)]
                interm['value_reward'] = value_reward
                list_dict = list_dict + [interm]
            for k in list_dict[0]:
                dict_list = []
                for d in list_dict:
                    dict_list = dict_list + [d[k]]
                full_int[k] = flatten(dict_list)
            return full_int


        def gen_random_list(len):
            random_list = []
            for i in range(len):
                random_list = random_list + [round(random.random())]
            return random_list


        def pavlovia_dict(dict,
                          domain='gain'):
            nb_trials = len(dict['value_safe'])
            column_order = ['crdm_sure_amt', 'crdm_sure_p', 'crdm_lott_top', 'crdm_lott_bot', 'crdm_lott_p',
                            'crdm_amb_lev', 'crdm_domain', 'crdm_img', 'crdm_nonzero_side']
            crdm_trials = {}
            crdm_trials['crdm_sure_amt'] = dict['value_safe']
            crdm_trials['crdm_sure_p'] = value_repeat(100, nb_trials)
            random_list = gen_random_list(nb_trials) # assign randomly top or bottom
            crdm_lott_top = []
            crdm_lott_bot = []
            crdm_nonzero_side = []
            for idx in range(len(random_list)):
                v = dict['value_reward'][idx]
                loc = random_list[idx]
                if loc == 1:
                    crdm_lott_top = crdm_lott_top + [v]
                    crdm_lott_bot = crdm_lott_bot + [0]
                    crdm_nonzero_side = crdm_nonzero_side + ['top']
                elif loc == 0:
                    crdm_lott_top = crdm_lott_top + [0]
                    crdm_lott_bot = crdm_lott_bot + [v]
                    crdm_nonzero_side = crdm_nonzero_side + ['bottom']
                    crdm_trials['crdm_lott_top'] = crdm_lott_top
            crdm_trials['crdm_lott_bot'] = crdm_lott_bot
            crdm_trials['crdm_nonzero_side'] = crdm_nonzero_side
            crdm_lott_p = []
            crdm_amb_lev = []
            for idx in range(len(dict['p_reward'])):
                p = dict['p_reward'][idx]
                crdm_lott_p = crdm_lott_p + [round(100 * p)]
                a = dict['ambiguity'][idx]
                crdm_amb_lev = crdm_amb_lev + [round(100 * a)]
            crdm_trials['crdm_lott_p'] = crdm_lott_p
            crdm_trials['crdm_amb_lev'] = crdm_amb_lev
            crdm_img = []
            for idx in range(len(crdm_trials['crdm_lott_p'])):
                p = crdm_trials['crdm_lott_p'][idx]
                a = crdm_trials['crdm_amb_lev'][idx]
                side = crdm_trials['crdm_nonzero_side'][idx]
                if a > 0:
                    crdm_img = crdm_img + ['ambig_' + str(a) + '.bmp']
                elif side == 'top':
                    crdm_img = crdm_img + ['risk_red_' + str(p) + '.bmp']
                elif side == 'bottom':
                    crdm_img = crdm_img + ['risk_blue_' + str(p) + '.bmp']
            crdm_trials['crdm_img'] = crdm_img
            crdm_trials['crdm_domain'] = value_repeat(domain, nb_trials)
            crdm_trials = order_keys(crdm_trials, column_order)
            return crdm_trials


        def get_trials(p_options,
                       amb_options,
                       alpha,
                       beta,
                       ordered_keys=[],
                       domain='gain'):
            rows_extr = get_extr_rows(p_options, domain=domain)
            rows_extr = add_ambig(rows_extr, amb_options)
            rows_extr = add_SV(rows_extr, alpha, beta, domain=domain)
            rows_extr = add_Vsafe(rows_extr, alpha,beta, domain=domain)
            rows_extr = order_keys(rows_extr, ordered_keys)
            #Subjective equality trials SE_neg == get_SE_trials(rows_extr, alpha, beta, domain='loss')
            #cent contains SE_neg within it... SE_neg not needed later on
            cent = get_cent_SE_trials(get_SE_trials(rows_extr, alpha, beta, domain=domain), alpha, beta, domain=domain)
            cent = order_keys(cent,ordered_keys)
            interm = get_interm_trials(rows_extr, alpha, beta, domain=domain)
            interm = order_keys(interm, ordered_keys)
            trials_list = [] #concatenate dictionaries
            trials_list.append(rows_extr)
            trials_list.append(interm)
            trials_list.append(cent)
            trials = dict_merge(trials_list)
            return round_to_50(trials)


        def get_element_by_col(my_dict, row_nb):
            row_dict = dict.fromkeys(my_dict.keys())
            for c in my_dict.keys():
                row_dict[c] = my_dict[c][row_nb]
            return row_dict


        def convert_list_dict(my_dict):
            my_list_dict = []
            nb_trials = len(my_dict[next(iter(my_dict))])
            for row_nb in range(nb_trials):
                row_dict = dict.fromkeys(my_dict.keys())
                row_dict = get_element_by_col(my_dict,row_nb)
                my_list_dict = my_list_dict + [row_dict]
            return my_list_dict

        #############################

        # round value_reward and value_safe to nearest 50 cents
        trials_gain = get_trials(p_options, amb_options, alpha_pos, beta_pos, ordered_keys=ordered_keys, domain='gain')
        trials_loss = get_trials(p_options, amb_options, alpha_neg, beta_neg, ordered_keys=ordered_keys, domain='loss')

        crdm_trials_gain = pavlovia_dict(trials_gain, domain='gain')
        crdm_trials_loss = pavlovia_dict(trials_loss, domain='loss')
        crdm_trials = dict_merge([crdm_trials_gain, crdm_trials_loss])
    CodeComponent crdm_santiago_py
      Code Type = Py
      disabled = True
      Begin Experiment:
        import math
        import matplotlib.pyplot as plt
        import numpy as np
        import os
        import pandas as pd

        ###Functions###############

        def get_extreme(p_options,
                        domain='gain'):
            ###Obtains extreme gain/loss for each probability
            """
            Inputs:
                - p_options = list of probability values (float)
            Output:
                - dict containing highest possible gain or loss for each probability ($50 or -$50)
            """
            extr = {}
            V = Vmax #default gain domain (max gain)
            if domain == 'loss': #loss domain
                V = Vmin #assign min value (max loss)
            for p in p_options: #iterate through probability levels
                extr[p] = V #assign max value (gain) or min value (loss) for each probability
            return extr

        def get_extr_df(extr_dict,
                        domain='gain'):
            ###Create DataFrame of extreme values for gain/loss trial probabilities
            """
            Inputs:
                - extr_dict = dict containing highest possible gain or loss for each probability ($50 or -$50)
            Output:
                - Dataframe containing column of extreme values for all trials
            """
            df_app = pd.DataFrame(extr_dict.items(), #all columns names and values
                                  columns=['p_reward', 'value_reward']) #add extra columns
            Extr_df = pd.concat([empty_df, df_app], ignore_index=True)
            category = 'Extr_pos'
            if domain == 'loss':
                category = 'Extr_neg'
            Extr_df['category'] = category
            Extr_df['ambiguity'] = A_null
            return Extr_df

        def add_ambig_extr(df,
                           amb_options,
                           domain='gain'):
            ###Add ambiguity trials to df
            """
            Inputs:
                - df
                - amb_options = list of possible ambiguity values
            Output:
                - Dataframe with appended ambiguity max values
            """
            amb_dict = {amb_prob: amb_options}
            df_app = pd.DataFrame(amb_dict.items(),
                                  columns=['p_reward', 'ambiguity'])
            df_app = df_app.explode('ambiguity') #flatten ambiguity column
            df_app['category'] = df['category']
            if domain == 'gain': #gain domain
                df_app['value_reward'] = Vmax #Max gain = $50
            else: #loss domain
                df_app['value_reward'] = Vmin #Max loss = -$50
            df = pd.concat([df, df_app], ignore_index=True)
            return df

        def append_SVreward(df,
                            alpha,
                            beta,
                            domain='gain'):
            ###Calculate SV of lotteries given Ss alpha and beta
            """
            Inputs:
                - df
                - alpha
                - beta
            Output:
                - Dataframe contain new SV reward values
            """
            Amp = 1.0
            if domain == 'loss':
                Amp = -1.0
            df['SV_reward'] = (df['p_reward'] - beta * df['ambiguity']/2) * Amp * (abs(df['value_reward']))**alpha
            return df

        def append_Vsafe(df,
                         alpha,
                         beta,
                         domain='gain'):
            ###Calculate SV of safe options given Ss alpha and beta
            """
            Inputs:
                - df
                - alpha
                - beta
            Output:
                - Dataframe
            """
            Amp = 1.0
            if domain == 'loss':
                Amp = -1.0
            df['SV_New_Safe'] = 0.5 * df['SV_reward']
            df['value_lott_SE'] = Amp * (abs(df['SV_New_Safe']) / (df['p_reward'] - beta * df['ambiguity']/2))**(1/alpha)
            df['value_safe'] = Amp * (abs(df['SV_New_Safe']))**(1/alpha)
            return df

        def calculate_value_reward(df,
                                   alpha,
                                   beta,
                                   domain='gain'):
            ###Calculate value of lotteries for new SV with same SVdelta
            """
            Inputs:
                - df
                - alpha
                - beta
            Output:
                - Dataframe
            """
            new_rows = []
            for index, row in df.iterrows():
                SV = row['SV_reward']
                value_safe = row['value_safe']
                p = row['p_reward']
                A = row['ambiguity']
                if A != 0:
                    p = 0.50
                if domain == 'gain':
                    if SV < 0.0:
                        continue
                    value_reward = (SV / (p - beta * A / 2))**(1/alpha)
                    if (value_reward < 100) and (value_reward >= 0.0):
                        new_rows.append({'category': row['category'], 'SV_reward': SV, 'p_reward': p, 'ambiguity': A, 'value_safe': value_safe, 'value_reward': value_reward})
                        #calculated values are used to create new dictionary for each combination, and collected in new rows list
                        new_df = pd.DataFrame(new_rows, columns=['category', 'p_reward','ambiguity', 'value_reward', 'SV_reward', 'value_safe']) #new DF from list
                        new_df = new_df.round(2)
                else: #loss domain
                    if SV > 0.0:
                        continue
                    value_reward = -((abs(SV) / (p - beta * A / 2))**(1/alpha))
                    if (value_reward >- 100) and (value_reward <= 0.0):
                        new_rows.append({'category': row['category'], 'SV_reward': SV, 'p_reward': p, 'ambiguity': A, 'value_safe': value_safe, 'value_reward': value_reward})
                        new_df = pd.DataFrame(new_rows, columns=['category', 'p_reward', 'ambiguity', 'value_reward', 'SV_reward', 'value_safe'])
                        new_df = new_df.round(2)
            return new_df

        def determine_nonzero_side(row):
            ###Determine nonzero side of lottery
            """
            Inputs:
                - row = current row values for each column
            Output:
                - String containing "top" or "bottom"
            """
            if row['crdm_lott_top'] != 0.00: #current trial lottery top is not zero
                return 'top' #red is non-zero side
            else:
                return 'bottom' #blue is non-zero side

        def determine_risk_image_file(row):
            ###Selects lottery image
            """
            Inputs:
                - row = current row values for each column
            Output:
                - f[0] or f[1] = risk trial image filename
            """
            for p, f in risk_images.items():
                if row['crdm_lott_p'] == p and row['crdm_nonzero_side'] == 'top':
                    return  f[1] #2nd idx for red
                elif row['crdm_lott_p'] == p and row['crdm_nonzero_side'] == 'bottom':
                    return f[0] #1st idx dict for blue

        def get_interm(df,
                       df_safe_pos,
                       beta,
                       alpha,
                       num_steps=2,
                       domain='gain'):
            Amp = 1.0
            if domain == 'loss':
                Amp = -1.0
            df_return = pd.DataFrame([], columns=list(df))
            df['SVrange'] = df['SV_reward'] - df['SV_New_Safe']
            df['SVstep'] =  df['SVrange']/(num_steps + 1)
            list_x = [i for i in range(-num_steps - 1, num_steps + 1) if i != 0]
            for x in list_x:
                df_int = df[['category', 'p_reward', 'ambiguity']].copy()
                if x == -num_steps - 1:
                    df_int['category'] = 'Zero_Reward'
                df_int['SV_reward'] = df['SV_New_Safe'] + x * df['SVstep']
                df_int['value_reward'] = Amp*(abs(df_int['SV_reward']) / (df_int['p_reward'] - beta * df_int['ambiguity']/2))**(1/alpha)
                df_int = pd.merge(df_int, df_safe_pos, on=['p_reward','ambiguity'])
                df_return = pd.concat([df_return, df_int], ignore_index=True)
            return df_return

        ########################


        subid = expInfo['participant'] #subject id
        p_options = [0.13, 0.25, 0.38, 0.5, 0.75] #possible probability values (lott)
        amb_options = [0.24, 0.5, 0.74] #possible portions of probability obscured (lott)
        amb_prob = 0.5 #probability for all ambiguity trials
        A_null = 0.0 #zero ambiguity
        Vmax = 50.0 #maximum possible payment
        Vmin = -50.0 #minimum possible payment
        Vsafe_pos = 5.0 #old safe option in positive trials
        Vsafe_neg = -5.0 #old safe option in negative trials
        desired_trials = 72 #number of trials needed for each domain
        empty_df = pd.DataFrame([], columns=['category', 'p_reward', 'value_reward']) #template df

        amb_images = {} #ambiguity images filesnames
        risk_images = {} #risk images filesnames
        for img_type in ["amb_images", "risk_images"]: #flexibly obtain image filenames for ambiguity and risk trials
            if img_type == "amb_images": #ambiguity trial images
                for option in amb_options:
                    amb_images[int(option*100)] = ["ambig_{0}.bmp".format(str(int(option*100)))]
            else: #risk trial images
                for option in p_options:
                    risk_images[int(option*100)] = ["risk_blue_{0}.bmp".format(str(int(option*100))),
                                                    "risk_red_{0}.bmp".format(str(int(option*100)))]


        ###GAIN DOMAIN###
        extrpos = get_extreme(p_options) #dict of extreme gain values for each probability ($50)
        post_mean_gain = rg.get_post_mean(np.exp(g_log_post), g_sets.param) #posterior mean for gain
        alpha_pos, beta_pos = post_mean_gain[0], post_mean_gain[1] #parameters for gains
        df_pos = get_extr_df(extrpos)
        df_pos = add_ambig_extr(df_pos, amb_options)
        df_pos = append_SVreward(df_pos, alpha_pos, beta_pos) #append SV of lottery trials to df
        df_pos = append_Vsafe(df_pos, alpha_pos, beta_pos) #append SV of safe trials to df
        #Safe option dataframe for merging multiple dataframes
        df_safe_pos = df_pos[['p_reward', 'ambiguity', 'SV_New_Safe', 'value_lott_SE', 'value_safe']].copy()
        #Define trials of subjective equality (SE)
        df_SE_pos = df_pos[['category', 'p_reward', 'ambiguity', 'value_lott_SE', 'SV_New_Safe']].copy()
        df_SE_pos['category'] = 'SE_pos'
        df_SE_pos = df_SE_pos.rename(columns={'value_lott_SE': 'value_reward'})
        df_SE_pos['value_safe'] = df_safe_pos['value_safe']
        df_SE_pos = df_SE_pos.rename(columns={'SV_New_Safe': 'SV_reward'})
        #Center around trial of subjective equality
        df_cent_pos = df_SE_pos.copy()
        df_cent_pos['category'] = 'Cent_SE_pos'
        df_adjusted_pos = df_cent_pos.copy()
        df_adjusted_pos['value_reward'] = df_adjusted_pos['value_reward'] + 2.0
        df_adjusted_neg = df_cent_pos.copy()
        df_adjusted_neg['value_reward'] = df_adjusted_neg['value_reward'] - 2.0
        df_cent_pos = pd.concat([df_cent_pos, df_adjusted_pos, df_adjusted_neg], ignore_index=True)
        df_cent_pos = append_SVreward(df_cent_pos, alpha_pos, beta_pos) #centered SE DF

        df_intpos_temp = df_pos.copy()
        df_intpos_temp['category'] = 'Int_pos'
        df_int_pos = get_interm(df_intpos_temp, df_safe_pos, beta_pos, alpha_pos, num_steps=2)

        df_Trials_gains = pd.concat([df_pos, df_int_pos, df_cent_pos], ignore_index=True) #concatenate three dataframes
        df_Trials_gains['SV_New_Safe'] = df_Trials_gains['value_safe']**alpha_pos
        df_Trials_gains['deltaSV'] = df_Trials_gains['SV_reward'] - df_Trials_gains['SV_New_Safe']
        df_Trials_gains = df_Trials_gains.drop(columns=['value_lott_SE'])

        #Convert selected columns to numeric values to be able to round
        columns_to_convert = ['value_reward', 'value_safe', 'SV_reward', 'SV_New_Safe', 'deltaSV']
        df_Trials_gains[columns_to_convert] = df_Trials_gains[columns_to_convert].apply(pd.to_numeric, errors='coerce')
        df_Trials_gains = df_Trials_gains.round(2)

        if len(df_Trials_gains) < desired_trials: #current number fewer than desired number of trials
            trials_needed = desired_trials - len(df_Trials_gains) #calculate number of extra trials for each category (gains and losses)
            trials_needed_gains = math.ceil(trials_needed)  #round up to nearest integer
            additional_trials_gains = df_pos.sample(n=trials_needed_gains, replace=True) #add new trials from extremes
            df_Trials_gains = pd.concat([df_Trials_gains, additional_trials_gains], ignore_index=True) # Concatenate extra trials to existing DataFrame
            df_Trials_gains = df_Trials_gains.drop(columns=['value_lott_SE'])
        if len(df_Trials_gains) > desired_trials: #current number greater than desired number of trials
            trials_to_delete = len(df_Trials_gains) - desired_trials
            rows_to_delete = df_Trials_gains[df_Trials_gains['category'] == 'Cent_SE_pos'].sample(n=trials_to_delete) #randomly sample rows to delete
            df_Trials_gains = df_Trials_gains.drop(rows_to_delete.index) #remove sampled rows from DataFrame

        df_Trials_gains['value_reward'] = df_Trials_gains['value_reward'].apply(lambda x: round(x * 2) / 2) #round to nearest 50 cents
        df_Trials_gains['value_safe'] = df_Trials_gains['value_safe'].apply(lambda x: round(x * 2) / 2)
        #Update value_safe and value_reward when it's 0. Note that the SV_reward for those trials will stay as previously calculate as 0.0
        df_Trials_gains.loc[df_Trials_gains['value_safe']==0, 'value_safe'] = 0.5
        df_Trials_gains.loc[df_Trials_gains['value_reward']==0, 'value_reward'] = 0.5

        #Format to match previous PsychoPy input csv and add lott_top and lott_bot values
        crdm_trials_gains = df_Trials_gains.copy()
        crdm_trials_gains['category'] = 'gain'
        crdm_trials_gains = crdm_trials_gains.sort_values('p_reward', ascending=True).reset_index(drop=True)
        crdm_trials_gains = crdm_trials_gains.drop(columns=['SV_reward', 'SV_New_Safe', 'deltaSV'])
        crdm_trials_gains['ambiguity'] = (crdm_trials_gains['ambiguity'] * 100).astype(int)
        crdm_trials_gains['p_reward'] = (crdm_trials_gains['p_reward'] * 100).astype(int)
        crdm_trials_gains = crdm_trials_gains.rename(columns={'value_safe': 'crdm_sure_amt',
                                                              'value_reward': 'crdm_lott',
                                                              'ambiguity': 'crdm_amb_lev',
                                                              'p_reward': 'crdm_lott_p',
                                                              'category': 'crdm_domain'})
        crdm_trials_gains['crdm_sure_p'] = 100
        column_order = ['crdm_sure_amt', 'crdm_sure_p', 'crdm_lott', 'crdm_lott_p', 'crdm_amb_lev', 'crdm_domain'] #reordering columns
        crdm_trials_gains = crdm_trials_gains[column_order]
        crdm_trials_gains = crdm_trials_gains.sort_values(by=['crdm_lott_p', 'crdm_amb_lev'], ascending=[True, True])
        zero_ambiguity_rows = crdm_trials_gains[crdm_trials_gains['crdm_amb_lev'] == 0] #find rows with zero 'crdm_amb_lev'
        non_zero_ambiguity_rows = crdm_trials_gains[crdm_trials_gains['crdm_amb_lev'] != 0] #find rows with nonzero 'crdm_amb_lev'
        crdm_trials_gains = pd.concat([zero_ambiguity_rows, non_zero_ambiguity_rows], ignore_index=True) #join zero ambiguity trials first
        random_assignments = np.random.choice(['crdm_lott_top', 'crdm_lott_bot'], size=len(crdm_trials_gains))
        crdm_trials_gains['crdm_lott_top'] = np.where(random_assignments == 'crdm_lott_top', crdm_trials_gains['crdm_lott'], 0)
        crdm_trials_gains['crdm_lott_bot'] = np.where(random_assignments == 'crdm_lott_bot', crdm_trials_gains['crdm_lott'], 0)
        column_order = ['crdm_sure_amt', 'crdm_sure_p', 'crdm_lott_top', 'crdm_lott_bot', 'crdm_lott_p', 'crdm_amb_lev', 'crdm_domain']
        crdm_trials_gain = crdm_trials_gains[column_order]



        ###LOSS DOMAIN###
        extrneg = get_extreme(p_options, domain='loss')
        post_mean_loss = rl.get_post_mean(np.exp(l_log_post), l_sets.param)
        alpha_neg, beta_neg = post_mean_loss[0], post_mean_loss[1]
        df_neg = get_extr_df(extrneg, domain='loss')
        df_neg = add_ambig_extr(df_neg, amb_options, domain='loss')
        df_neg = append_SVreward(df_neg, alpha_neg, beta_neg, domain='loss')
        df_neg = append_Vsafe(df_neg, alpha_neg, beta_neg, domain='loss')
        df_safe_neg = df_neg[['p_reward', 'ambiguity', 'SV_New_Safe', 'value_lott_SE', 'value_safe']].copy()
        df_SE_neg = df_neg[['category', 'p_reward', 'ambiguity', 'value_lott_SE', 'SV_New_Safe']].copy()
        df_SE_neg['category'] = 'SE_neg'
        df_SE_neg = df_SE_neg.rename(columns={'value_lott_SE': 'value_reward'})
        df_SE_neg['value_safe'] = df_safe_neg['value_safe']
        df_SE_neg = df_SE_neg.rename(columns={'SV_New_Safe': 'SV_reward'})
        df_cent_neg = df_SE_neg.copy()
        df_cent_neg['category'] = 'Cent_SE_neg'
        df1_adjusted_pos = df_cent_neg.copy()
        df1_adjusted_pos['value_reward'] = df1_adjusted_pos['value_reward'] + 2.0
        df1_adjusted_neg = df_cent_neg.copy()
        df1_adjusted_neg['value_reward'] = df1_adjusted_neg['value_reward'] - 2.0
        df_cent_neg = pd.concat([df_cent_neg, df1_adjusted_pos, df1_adjusted_neg], ignore_index=True)
        df_cent_neg = append_SVreward(df_cent_neg, alpha_neg, beta_neg, domain='loss')

        df_intneg_temp = df_neg.copy()
        df_intneg_temp['category'] = 'Int_neg'
        df_int_neg = get_interm(df_intneg_temp, df_safe_neg, beta_neg, alpha_neg, num_steps=2, domain='loss')

        df_Trials_losses = pd.concat([df_neg,df_cent_neg, df_int_neg], ignore_index=True)
        df_Trials_losses['SV_New_Safe'] = -abs(df_Trials_gains['value_safe'])**alpha_pos
        df_Trials_losses['deltaSV'] = df_Trials_losses['SV_reward'] - df_Trials_losses['SV_New_Safe']
        df_Trials_losses = df_Trials_losses.drop(columns=['value_lott_SE'])
        #df_Trials_losses = df_Trials_losses.round(2)

        columns_to_convert = ['value_reward', 'value_safe', 'SV_reward']
        df_Trials_losses[columns_to_convert] = df_Trials_losses[columns_to_convert].apply(pd.to_numeric, errors='coerce')
        df_Trials_losses = df_Trials_losses.round(2)

        if len(df_Trials_losses) < desired_trials:
            trials_needed = desired_trials - len(df_Trials_losses)
            trials_needed_losses = math.floor(trials_needed)
            additional_trials_losses = df_neg.sample(n=trials_needed_gains, replace=True)
            df_Trials_losses = pd.concat([df_Trials_losses, additional_trials_losses], ignore_index=True)
            df_Trials_losses = df_Trials_losses.drop(columns=['value_lott_SE'])
        if len(df_Trials_losses) > desired_trials:
            trials_to_delete = len(df_Trials_losses) - desired_trials
            rows_to_delete = df_Trials_losses[df_Trials_losses['category'] == 'Cent_SE_neg'].sample(n=trials_to_delete)
            df_Trials_losses = df_Trials_losses.drop(rows_to_delete.index)

        df_Trials_losses = df_Trials_losses.reset_index(drop=True)
        df_Trials_losses['value_reward'] = df_Trials_losses['value_reward'].apply(lambda x: round(x * 2) / 2)
        df_Trials_losses['value_safe'] = df_Trials_losses['value_safe'].apply(lambda x: round(x * 2) / 2)
        df_Trials_losses.loc[df_Trials_losses['value_safe']==0, 'value_safe'] = -0.5
        df_Trials_losses.loc[df_Trials_losses['value_reward']==0, 'value_reward'] = -0.5

        crdm_trials_losses = df_Trials_losses.copy()
        crdm_trials_losses = crdm_trials_losses.sort_values('p_reward', ascending=True).reset_index(drop=True)
        crdm_trials_losses['category'] = 'loss'
        crdm_trials_losses = crdm_trials_losses.drop(columns=['SV_reward', 'SV_New_Safe', 'deltaSV'])
        crdm_trials_losses['ambiguity'] = (crdm_trials_losses['ambiguity'] * 100).astype(int)
        crdm_trials_losses['p_reward'] = (crdm_trials_losses['p_reward'] * 100).astype(int)
        crdm_trials_losses = crdm_trials_losses.rename(columns={'value_safe': 'crdm_sure_amt',
                                                                'value_reward': 'crdm_lott',
                                                                'ambiguity': 'crdm_amb_lev',
                                                                'p_reward': 'crdm_lott_p',
                                                                'category': 'crdm_domain'})
        crdm_trials_losses['crdm_sure_p'] = 100
        column_order = ['crdm_sure_amt', 'crdm_sure_p', 'crdm_lott', 'crdm_lott_p', 'crdm_amb_lev', 'crdm_domain']
        crdm_trials_losses = crdm_trials_losses[column_order]
        crdm_trials_losses = crdm_trials_losses.sort_values(by=['crdm_lott_p', 'crdm_amb_lev'], ascending=[True,True])
        zero_ambiguity_rows_loss = crdm_trials_losses[crdm_trials_losses['crdm_amb_lev'] == 0]
        non_zero_ambiguity_rows_loss = crdm_trials_losses[crdm_trials_losses['crdm_amb_lev'] != 0]
        crdm_trials_losses = pd.concat([zero_ambiguity_rows_loss, non_zero_ambiguity_rows_loss], ignore_index=True)
        random_assignments = np.random.choice(['crdm_lott_top', 'crdm_lott_bot'], size=len(crdm_trials_losses))
        crdm_trials_losses['crdm_lott_top'] = np.where(random_assignments == 'crdm_lott_top', crdm_trials_losses['crdm_lott'], 0)
        crdm_trials_losses['crdm_lott_bot'] = np.where(random_assignments == 'crdm_lott_bot', crdm_trials_losses['crdm_lott'], 0)
        column_order = ['crdm_sure_amt', 'crdm_sure_p', 'crdm_lott_top', 'crdm_lott_bot', 'crdm_lott_p', 'crdm_amb_lev', 'crdm_domain']
        crdm_trials_loss = crdm_trials_losses[column_order]


        #Join GAIN & LOSS DataFrames and format for trial input CSV
        crdm_trials = pd.concat([crdm_trials_gain, crdm_trials_loss], ignore_index=True)
        crdm_trials['crdm_nonzero_side'] = crdm_trials.apply(determine_nonzero_side, axis=1) #create "crdm_nonzero_side
        crdm_trials['crdm_img'] = crdm_trials.apply(determine_risk_image_file, axis=1) #create 'crdm_img' column
        column_order = ['crdm_sure_amt', 'crdm_sure_p', 'crdm_lott_top', 'crdm_lott_bot', 'crdm_lott_p', 'crdm_amb_lev', 'crdm_domain', 'crdm_img', 'crdm_nonzero_side']
        crdm_trials = crdm_trials[column_order]

        #Save adaptive CSV to subject-specific folder
        crdm_trials_csv = 'data/{0}/session{1}/{0}-{1}_ADOtrials.csv'.format(subid, expInfo['session']) #csv location/format
        crdm_trials.to_csv(crdm_trials_csv, float_format='%.2f', index=False) #saving csv
  Routine crdm_pract2_feedback
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    CodeComponent crdm_pract2_feedback_code
      Code Type = Both
      Begin JS Routine:
        if ((crdm_pract2_key === undefined)) {
            crdm_msg2 = "NO RESPONSE";
        } else {
            if (crdm_pract2_sure_key) {
                crdm_msg2 = ("CERTAIN $" + format(crdm_sure_amt2.toString()));
            } else {
                crdm_msg2 = "LOTTERY";
            }
        }
      Begin Routine:
        if len(crdm_pract2_key) == 0: #Ss did not respond
            crdm_msg2 = "NO RESPONSE"
        elif crdm_pract2_sure_key: #Ss chose sure amt
            crdm_msg2 = "CERTAIN $" + str(format(crdm_sure_amt2))
        else: #Ss chose lottery
            crdm_msg2 = "LOTTERY"
    TextComponent crdm_pract2_feedback_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $crdm_msg2
      wrapWidth = 1.5
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  Routine crdm_pract2_conf
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    CodeComponent crdm_pract2_conf_code
      Code Type = Both
      Begin JS Routine:
        if ((crdm_pract2_key === undefined))  {
            continueRoutine = false;
        }
        conf1_color = [0, 0, 0];
        conf2_color = [0, 0, 0];
        conf3_color = [0, 0, 0];
        conf4_color = [0, 0, 0];
      Begin Routine:
        #Ss did not respond
        if len(crdm_pract2_key) == 0:
            continueRoutine = False

        #set default gray for all four response boxes
        conf1_color = [0, 0, 0]
        conf2_color = [0, 0, 0]
        conf3_color = [0, 0, 0]
        conf4_color = [0, 0, 0]
      Each Frame:
        #resp is received
        crdm_pract_conf_key = crdm_pract2_conf_resp.keys
        if len(crdm_pract_conf_key) == 1:
            #not at all confident
            if crdm_pract_conf_key == "1":
                #change box color to indicate selection
                conf1_color = "darkgray"
                conf2_color = [0,0,0]
                conf3_color = [0,0,0]
                conf4_color = [0,0,0]
            #less confident
            elif crdm_pract_conf_key == "2":
                conf1_color = [0,0,0]
                conf2_color = "darkgray"
                conf3_color = [0,0,0]
                conf4_color = [0,0,0]
            #somewhat confident
            elif crdm_pract_conf_key == "3":
                conf1_color = [0,0,0]
                conf2_color = [0,0,0]
                conf3_color = "darkgray"
                conf4_color = [0,0,0]
            #very confident
            elif crdm_pract_conf_key == "4":
                conf1_color = [0,0,0]
                conf2_color = [0,0,0]
                conf3_color = [0,0,0]
                conf4_color = "darkgray"
      Each JS Frame:
        crdm_pract_conf_key = crdm_pract2_conf_resp.keys;
        if (!(crdm_pract_conf_key == undefined) && (crdm_pract_conf_key.length === 1)) {
            if ((crdm_pract_conf_key === "1")) {
                conf1_color = "darkgray";
                conf2_color = [0, 0, 0];
                conf3_color = [0, 0, 0];
                conf4_color = [0, 0, 0];
            } else {
                if ((crdm_pract_conf_key === "2")) {
                    conf1_color = [0, 0, 0];
                    conf2_color = "darkgray";
                    conf3_color = [0, 0, 0];
                    conf4_color = [0, 0, 0];
                } else {
                    if ((crdm_pract_conf_key === "3")) {
                        conf1_color = [0, 0, 0];
                        conf2_color = [0, 0, 0];
                        conf3_color = "darkgray";
                        conf4_color = [0, 0, 0];
                    } else {
                        if ((crdm_pract_conf_key === "4")) {
                            conf1_color = [0, 0, 0];
                            conf2_color = [0, 0, 0];
                            conf3_color = [0, 0, 0];
                            conf4_color = "darkgray";
                        }
                    }
                }
            }
        }
      End JS Routine:
        conf1_color = [0, 0, 0];
        conf2_color = [0, 0, 0];
        conf3_color = [0, 0, 0];
        conf4_color = [0, 0, 0];

        crdm_conf1.setFillColor(new util.Color(conf1_color), false);
        crdm_conf2.setFillColor(new util.Color(conf2_color), false);
        crdm_conf3.setFillColor(new util.Color(conf3_color), false);
        crdm_conf4.setFillColor(new util.Color(conf4_color), false);
    TextComponent crdm_pract2_conf_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = How confident are you in your choice?
      wrapWidth = 1.5
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    PolygonComponent crdm_pract2_conf1
      fillColor [set every frame] = $conf1_color
      lineWidth = 10
      pos = (-0.6, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent crdm_pract2_conf1_txt
      letterHeight = 0.04
      pos = (-0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Not at all
        confident

        1
    PolygonComponent crdm_pract2_conf2
      fillColor [set every frame] = $conf2_color
      lineWidth = 10
      pos = (-0.2, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent crdm_pract2_conf2_txt
      letterHeight = 0.04
      pos = (-0.2, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Less
        confident

        2
    PolygonComponent crdm_pract2_conf3
      fillColor [set every frame] = $conf3_color
      lineWidth = 10
      pos = (0.2, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent crdm_pract2_conf3_txt
      letterHeight = 0.04
      pos = (0.2, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Somewhat
        confident

        3
    PolygonComponent crdm_pract2_conf4
      fillColor [set every frame] = $conf4_color
      lineWidth = 10
      pos = (0.6, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent crdm_pract2_conf4_txt
      letterHeight = 0.04
      pos = (0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Very
        confident

        4
    KeyboardComponent crdm_pract2_conf_resp
      allowedKeys = '1', '2', '3', '4'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine crdm_pract2_trial
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    CodeComponent crdm_pract2_trial_code
      Code Type = Both
      Begin Experiment:
        #position of certain amount option
        crdm_sure_pos2 = []
        crdm_sure_resp2 = []
        crdm_crdm_msg2 = ""

        #stimuli positions and respective responses
        #left/right screen locations
        crdm_pos2 = [[-0.5, 0], [0.5, 0]]
        crdm_resp2 = ["1", "2"] #1 = left, 2 = right
      Begin JS Experiment:
        crdm_sure_pos2 = [];
        crdm_sure_resp2 = [];
        crdm_crdm_msg2 = "";
        crdm_pos2 = [[(- 0.5), 0], [0.5, 0]];
        crdm_resp2 = ["1", "2"];
      Begin JS Routine:
        my_loop = eval(crdm_practice_loop2_name);
        crdm_idx2 = random.randint(0, 1);
        crdm_sure_pos2 = crdm_pos2[crdm_idx2];
        crdm_sure_resp2 = crdm_resp2[crdm_idx2];
      Begin Routine:
        my_loop = eval(crdm_practice_loop2_name)

        #random index for certain outcome position and response
        crdm_idx2 = random.randint(0,1)
        crdm_sure_pos2 = crdm_pos2[crdm_idx2]
        crdm_sure_resp2 = crdm_resp2[crdm_idx2]
      End JS Routine:
        crdm_pract2_key = crdm_pract2_trial_resp.keys;
        crdm_pract2_sure_key = crdm_pract2_trial_resp.corr;
        my_loop.addData("crdm_trial_type", "practice2");
      End Routine:
        crdm_pract2_key = crdm_pract2_trial_resp.keys
        crdm_pract2_sure_key = crdm_pract2_trial_resp.corr

        my_loop.addData("crdm_trial_type", "practice2")
    ImageComponent crdm_pract2_trial_img
      image [set every repeat] = $"images/" + crdm_img2
      saveStartStop = False
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent crdm_pract2_trial_lott_top_txt
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $str("$"+str(format(crdm_lott_top2)))
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    TextComponent crdm_pract2_trial_lott_bot_txt
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $str("$"+str(format(crdm_lott_bot2)))
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    TextComponent crdm_pract2_trial_sure_amt_txt
      letterHeight = 0.06
      pos [set every repeat] = crdm_sure_pos2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text [set every repeat]:
        $str("$"+str(format(crdm_sure_amt2)))
    PolygonComponent GRFX_fix2
      fillColor = [0,0,0]
      lineColor = [0,0,0]
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 2
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    PolygonComponent crdm_pract2_trial_cue
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, 1.0000, -1.0000
      saveStartStop = False
      shape = circle
      size = (0.04, 0.04)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 2
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    KeyboardComponent crdm_pract2_trial_resp
      allowedKeys = '1', '2'
      correctAns = $crdm_sure_resp2
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3
      stopVal [duration (s)] = 2
      store = first key
      storeCorrect = True
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  Routine crdm_pract2_iti
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    CodeComponent crdm_pract2_iti_code
      Code Type = Both
      Begin JS Routine:
        if (!(crdm_pract2_trials.thisTrialN == undefined) && (crdm_pract2_trials.thisTrialN === 5)) {
            continueRoutine = false;
        }
      Begin Routine:
        #3 CRDM practice trials
        if crdm_pract2_trials.thisTrialN == 5:
            continueRoutine = False
    PolygonComponent crdm_pract2_iti_poly
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine crdm_pract1_instr
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    TextComponent crdm_pract1_instr_name_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Risk & Ambiguity Task *
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    TextComponent crdm_pract1_instr_txt
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        In this first section, you will only be asked to indicate your choice between the certain outcome and the lottery. You will not be asked to rate your choice confidence.

        When the green circle appears, indicate your decision by pressing YELLOW for the left option and GREEN for the right option.

        Let's practice!
    TextComponent crdm_pract1_instr_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to begin.
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    KeyboardComponent crdm_pract1_instr_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_bonus
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    CodeComponent crdm_bonus_code
      Code Type = Both
      Begin JS Routine:
        exp = [];
        choice = [];
        money = [];
        trial_img = [];
        top = [];
        bottom = [];
        outcome = [];
        nonzero_side = [];
        domain = [];
        sure_amt = "";
        earnings_text = "";
        choice_text = "";
        outcome_color = [0, 0, 0];
        chip_color = [0, 0, 0];
        chip_text = "";
        choice_outcome = "";
        money_outcome = "";
        idx = Number.parseInt((random.random() * crdm_earnings.length));
        [choice, money, sure_amt, trial_img, top, bottom, outcome, nonzero_side, domain] = crdm_earnings[idx];
        money = format(money);
        my_loop.addData("crdm_bonus_choice", choice);
        my_loop.addData("crdm_bonus_amt", money);
        red_nonzero = false;
        if ((nonzero_side === "top")) {
            red_nonzero = true;
        }
        if ((choice === "sure")) {
            choice_text = "*CERTAIN*";
            outcome_color = [0.7098, 0.2941, (- 0.749)];
            chip_color = [0, 0, 0];
            chip_text = "";
            choice_outcome = ("$" + money.toString());
            money_outcome = "";
        } else {
            choice_text = "*PLAY THE LOTTERY*";
            if ((red_nonzero === true)) {
                if (((outcome === 1) && (domain === "gain"))) {
                    outcome_color = [0.9608, 0.0039, (- 0.1059)];
                    chip_color = [0.9608, 0.0039, (- 0.1059)];
                    choice_outcome = "A red chip";
                    chip_text = "was drawn and the outcome was";
                    money_outcome = ("$" + money.toString());
                } else {
                    if (((outcome === 1) && (domain === "loss"))) {
                        outcome_color = [(- 0.2157), 0.1686, 0.8588];
                        chip_color = [(- 0.2157), 0.1686, 0.8588];
                        choice_outcome = "A blue chip";
                        chip_text = "was drawn and the outcome was";
                        money_outcome = ("$" + money.toString());
                    } else {
                        if (((outcome === 0) && (domain === "gain"))) {
                            outcome_color = [(- 0.2157), 0.1686, 0.8588];
                            chip_color = [(- 0.2157), 0.1686, 0.8588];
                            choice_outcome = "A blue chip";
                            chip_text = "was drawn and the outcome was";
                            money_outcome = ("$" + money.toString());
                        } else {
                            if (((outcome === 0) && (domain === "loss"))) {
                                outcome_color = [0.9608, 0.0039, (- 0.1059)];
                                chip_color = [0.9608, 0.0039, (- 0.1059)];
                                choice_outcome = "A red chip";
                                chip_text = "was drawn and the outcome was";
                                money_outcome = ("$" + money.toString());
                            }
                        }
                    }
                }
            } else {
                if (((outcome === 1) && (domain === "gain"))) {
                    outcome_color = [(- 0.2157), 0.1686, 0.8588];
                    chip_color = [(- 0.2157), 0.1686, 0.8588];
                    choice_outcome = "A blue chip";
                    chip_text = "was drawn and the outcome was";
                    money_outcome = ("$" + money.toString());
                } else {
                    if (((outcome === 1) && (domain === "loss"))) {
                        outcome_color = [0.9608, 0.0039, (- 0.1059)];
                        chip_color = [0.9608, 0.0039, (- 0.1059)];
                        choice_outcome = "A red chip";
                        chip_text = "was drawn and the outcome was";
                        money_outcome = ("$" + money.toString());
                    } else {
                        if (((outcome === 0) && (domain === "gain"))) {
                            outcome_color = [0.9608, 0.0039, (- 0.1059)];
                            chip_color = [0.9608, 0.0039, (- 0.1059)];
                            choice_outcome = "A red chip";
                            chip_text = "was drawn and the outcome was";
                            money_outcome = ("$" + money.toString());
                        } else {
                            if (((outcome === 0) && (domain === "loss"))) {
                                outcome_color = [(- 0.2157), 0.1686, 0.8588];
                                chip_color = [(- 0.2157), 0.1686, 0.8588];
                                choice_outcome = "A blue chip";
                                chip_text = "was drawn and the outcome was";
                                money_outcome = ("$" + money.toString());
                            }
                        }
                    }
                }
            }
        }
      Begin Routine:
        exp = []
        choice = []
        money = []
        trial_img = []
        top = []
        bottom = []
        outcome = []
        nonzero_side = []
        domain = []
        sure_amt = ""
        earnings_text = ""
        choice_text = ""
        outcome_color = [0,0,0]
        chip_color = [0,0,0]
        chip_text = ""
        choice_outcome = ""
        money_outcome = ""

        #indexing examples
        #certain chosen - ("sure", crdm_sure_amt, crdm_sure_amt, crdm_img, crdm_lott_top, crdm_lott_bot, -1, crdm_nonzero_side, crdm_domain)
        #lotto chosen, win top - ("lott", crdm_lott_top, crdm_sure_amt, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_nonzero_side, crdm_domain)
        #lotto chosen, win bottom - ("lott", crdm_lott_bot, crdm_sure_amt, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_nonzero_side, crdm_domain)

        idx = int(random.random() * len(crdm_earnings))
        choice, money, sure_amt, trial_img, top, bottom, outcome, nonzero_side, domain = crdm_earnings[idx]
        money = format(money)
        my_loop.addData("crdm_bonus_choice", choice)
        my_loop.addData("crdm_bonus_amt", money)

        red_nonzero = False
        #top is always red, bottom is always blue
        if nonzero_side == "top":
            red_nonzero = True

        #text for bonus payment screen
        if choice == "sure": #Ss chose sure amt
            choice_text = "*CERTAIN*"
            outcome_color = [0.7098, 0.2941, -0.7490]
            chip_color = [0,0,0]
            chip_text = ""
            choice_outcome = "$" + str(money)
            money_outcome = ""

        else: #Ss chose lottery
            choice_text = "*PLAY THE LOTTERY*"
            if red_nonzero == True: #red (top) is nonzero side
                if outcome == 1 and domain == "gain": #Ss won the lotto on gain trial
                    outcome_color = [0.9608, 0.0039, -0.1059]
                    chip_color = [0.9608, 0.0039, -0.1059]
                    choice_outcome = "A red chip" #blue chip is drawn and is winning side (+$ == win some money)
                    chip_text = "was drawn and the outcome was"
                    money_outcome = "$"+str(money)
                elif outcome == 1 and domain == "loss": #Ss won the lotto on loss trial
                    outcome_color = [-0.2157, 0.1686, 0.8588]
                    chip_color = [-0.2157, 0.1686, 0.8588]
                    choice_outcome = "A blue chip" #blue chip is drawn and is winning side ($0 == lose no money)
                    chip_text = "was drawn and the outcome was"
                    money_outcome = "$"+str(money)
                elif outcome == 0 and domain == "gain": #Ss lost lotto on gain trial
                    outcome_color = [-0.2157, 0.1686, 0.8588]
                    chip_color = [-0.2157, 0.1686, 0.8588]
                    choice_outcome = "A blue chip" #blue chip is drawn and is losing side ($0 == win no money)
                    chip_text = "was drawn and the outcome was"
                    money_outcome = "$"+str(money)
                elif outcome == 0 and domain == "loss": #Ss lost lotto on gloss trial
                    outcome_color = [0.9608, 0.0039, -0.1059]
                    chip_color = [0.9608, 0.0039, -0.1059]
                    choice_outcome = "A red chip" #red chip is drawn and is losing side (-$ == lose some money)
                    chip_text = "was drawn and the outcome was"
                    money_outcome = "$"+str(money)
            else: #blue (bottom) is nonzero side
                if outcome == 1 and domain == "gain": #Ss won the lotto on gain trial
                    outcome_color = [-0.2157, 0.1686, 0.8588]
                    chip_color = [-0.2157, 0.1686, 0.8588]
                    choice_outcome = "A blue chip" #blue chip is drawn and is winning side (+$ == win some money)
                    chip_text = "was drawn and the outcome was"
                    money_outcome = "$"+str(money)
                elif outcome == 1 and domain == "loss": #Ss won the lotto on loss trial
                    outcome_color = [0.9608, 0.0039, -0.1059]
                    chip_color = [0.9608, 0.0039, -0.1059]
                    choice_outcome = "A red chip" #red chip is drawn and is winning side ($0 == lose no money)
                    chip_text = "was drawn and the outcome was"
                    money_outcome = "$"+str(money)
                elif outcome == 0 and domain == "gain": #Ss lost lotto on gain trial
                    outcome_color = [0.9608, 0.0039, -0.1059]
                    chip_color = [0.9608, 0.0039, -0.1059]
                    choice_outcome = "A red chip" #red chip is drawn and is losing side ($0 == win no money)
                    chip_text = "was drawn and the outcome was"
                    money_outcome = "$"+str(money)
                elif outcome == 0 and domain == "loss": #Ss lost lotto on gloss trial
                    outcome_color = [-0.2157, 0.1686, 0.8588]
                    chip_color = [-0.2157, 0.1686, 0.8588]
                    choice_outcome = "A blue chip" #blue chip is drawn and is losing side (-$ == lose some money)
                    chip_text = "was drawn and the outcome was"
                    money_outcome = "$"+str(money)
    TextComponent crdm_bonus_thanks_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.35
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      text:
        Your randomly selected *bonus earnings trial* is from the
        Risk & Ambiguity Task!
    TextComponent crdm_bonus_lott_top
      letterHeight = 0.04
      pos = (0.6, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $str("$"+str(format(top)))
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    ImageComponent crdm_bonus_img
      image [set every repeat] = $"images/" + trial_img
      pos = (0.6, -0.1)
      saveStartStop = False
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent crdm_bonus_lott_bot
      letterHeight = 0.04
      pos = (0.6, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $str("$"+str(format(bottom)))
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    TextComponent crdm_bonus_sure_amt_txt
      letterHeight = 0.04
      pos = (0.375, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $str("$"+str(format(sure_amt)))
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    TextComponent crdm_bonus_prompt_txt
      letterHeight = 0.04
      pos = (-0.2, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = In this trial, you chose:
      wrapWidth = 1
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    TextComponent crdm_bonus_choice_text_txt
      letterHeight = 0.05
      pos = (-0.2, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $choice_text
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    TextComponent crdm_bonus_choice_outcome_txt
      color [set every repeat] = $outcome_color
      letterHeight = 0.06
      pos = (-0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $choice_outcome
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    TextComponent crdm_bonus_drawn_txt
      letterHeight = 0.04
      pos = (-0.2, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $chip_text
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    PolygonComponent crdm_bonus_chip_poly
      fillColor [set every repeat] = $chip_color
      lineColor [set every repeat] = $chip_color
      saveStartStop = False
      shape = circle
      size = (0.075, 0.075)
      startVal [time (s)] = 0.0
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    TextComponent crdm_bonus_winnings_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.08
      pos = (-0.2, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $money_outcome
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    TextComponent crdm_bonus_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to end.
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    KeyboardComponent crdm_bonus_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine crdm_instr1
  Routine crdm_instr2
  Routine crdm_instr3
  Routine crdm_instr4
  Routine crdm_instr5
  Routine crdm_instr6
  Routine crdm_instr7
  Routine crdm_instr8
  Routine crdm_pract1_instr
  Routine crdm_pract_init_fix
  LoopInitiator crdm_pract1_trials loopType="TrialHandler"
    conditionsFile = crdm_practice1.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('crdm_sure_amt1', 5), ('crdm_sure_p1', 100), ('crdm_lott_top1', 20), ('crdm_lott_bot1', 0), ('crdm_lott_p1', 13), ('crdm_amb_lev1', 0), ('crdm_domain1', 'gain'), ('crdm_img1', 'risk_red_13.bmp'), ('crdm_nonzero_side1', 'top')]),
      OrderedDict([('crdm_sure_amt1', 5), ('crdm_sure_p1', 100), ('crdm_lott_top1', 0), ('crdm_lott_bot1', 50), ('crdm_lott_p1', 25), ('crdm_amb_lev1', 0), ('crdm_domain1', 'gain'), ('crdm_img1', 'risk_blue_25.bmp'), ('crdm_nonzero_side1', 'bottom')]),
      OrderedDict([('crdm_sure_amt1', 5), ('crdm_sure_p1', 100), ('crdm_lott_top1', 40), ('crdm_lott_bot1', 0), ('crdm_lott_p1', 50), ('crdm_amb_lev1', 74), ('crdm_domain1', 'gain'), ('crdm_img1', 'ambig_74.bmp'), ('crdm_nonzero_side1', 'top')]),
      OrderedDict([('crdm_sure_amt1', -5), ('crdm_sure_p1', 100), ('crdm_lott_top1', 0), ('crdm_lott_bot1', -8), ('crdm_lott_p1', 75), ('crdm_amb_lev1', 0), ('crdm_domain1', 'loss'), ('crdm_img1', 'risk_blue_75.bmp'), ('crdm_nonzero_side1', 'bottom')]),
      OrderedDict([('crdm_sure_amt1', -5), ('crdm_sure_p1', 100), ('crdm_lott_top1', -20), ('crdm_lott_bot1', 0), ('crdm_lott_p1', 75), ('crdm_amb_lev1', 0), ('crdm_domain1', 'loss'), ('crdm_img1', 'risk_red_75.bmp'), ('crdm_nonzero_side1', 'top')]),
      OrderedDict([('crdm_sure_amt1', -5), ('crdm_sure_p1', 100), ('crdm_lott_top1', 0), ('crdm_lott_bot1', -40), ('crdm_lott_p1', 75), ('crdm_amb_lev1', 0), ('crdm_domain1', 'loss'), ('crdm_img1', 'risk_blue_75.bmp'), ('crdm_nonzero_side1', 'bottom')])]
    Routine crdm_pract1_trial
    Routine crdm_pract1_feedback
  LoopTerminator crdm_pract1_trials
  Routine crdm_qp_instr
  LoopInitiator crdm_questplus_trials loopType="TrialHandler"
    conditionsFile = crdm_questplus_trials.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('crdm_trial_type', 'gain'), ('crdm_nonzero_side', 'top')]),
      OrderedDict([('crdm_trial_type', 'gain'), ('crdm_nonzero_side', 'bottom')]),
      OrderedDict([('crdm_trial_type', 'gain'), ('crdm_nonzero_side', 'top')]),
      OrderedDict([('crdm_trial_type', 'gain'), ('crdm_nonzero_side', 'bottom')]),
      OrderedDict([('crdm_trial_type', 'gain'), ('crdm_nonzero_side', 'top')]),
      OrderedDict([('crdm_trial_type', 'gain'), ('crdm_nonzero_side', 'bottom')]),
      OrderedDict([('crdm_trial_type', 'gain'), ('crdm_nonzero_side', 'top')]),
      OrderedDict([('crdm_trial_type', 'gain'), ('crdm_nonzero_side', 'bottom')]),
      OrderedDict([('crdm_trial_type', 'gain'), ('crdm_nonzero_side', 'top')]),
      OrderedDict([('crdm_trial_type', 'gain'), ('crdm_nonzero_side', 'bottom')]),
      OrderedDict([('crdm_trial_type', 'gain'), ('crdm_nonzero_side', 'top')]),
      OrderedDict([('crdm_trial_type', 'gain'), ('crdm_nonzero_side', 'bottom')]),
      OrderedDict([('crdm_trial_type', 'gain'), ('crdm_nonzero_side', 'top')]),
      OrderedDict([('crdm_trial_type', 'gain'), ('crdm_nonzero_side', 'bottom')]),
      OrderedDict([('crdm_trial_type', 'gain'), ('crdm_nonzero_side', 'top')]),
      OrderedDict([('crdm_trial_type', 'gain'), ('crdm_nonzero_side', 'bottom')]),
      OrderedDict([('crdm_trial_type', 'gain'), ('crdm_nonzero_side', 'top')]),
      OrderedDict([('crdm_trial_type', 'gain'), ('crdm_nonzero_side', 'bottom')]),
      OrderedDict([('crdm_trial_type', 'gain'), ('crdm_nonzero_side', 'top')]),
      OrderedDict([('crdm_trial_type', 'gain'), ('crdm_nonzero_side', 'bottom')])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
    Routine crdm_questplus
    Routine crdm_qp_feedback
  LoopTerminator crdm_questplus_trials
  Routine crdm_schedule_gen
  Routine crdm_pract2_instr
  Routine crdm_pract_init_fix
  LoopInitiator crdm_pract2_trials loopType="TrialHandler"
    conditionsFile = crdm_practice2.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('crdm_sure_amt2', 5), ('crdm_sure_p2', 100), ('crdm_lott_top2', 20), ('crdm_lott_bot2', 0), ('crdm_lott_p2', 13), ('crdm_amb_lev2', 0), ('crdm_domain2', 'gain'), ('crdm_img2', 'risk_red_13.bmp'), ('crdm_nonzero_side2', 'top')]),
      OrderedDict([('crdm_sure_amt2', 5), ('crdm_sure_p2', 100), ('crdm_lott_top2', 0), ('crdm_lott_bot2', 50), ('crdm_lott_p2', 25), ('crdm_amb_lev2', 0), ('crdm_domain2', 'gain'), ('crdm_img2', 'risk_blue_25.bmp'), ('crdm_nonzero_side2', 'bottom')]),
      OrderedDict([('crdm_sure_amt2', 5), ('crdm_sure_p2', 100), ('crdm_lott_top2', 40), ('crdm_lott_bot2', 0), ('crdm_lott_p2', 50), ('crdm_amb_lev2', 74), ('crdm_domain2', 'gain'), ('crdm_img2', 'ambig_74.bmp'), ('crdm_nonzero_side2', 'top')]),
      OrderedDict([('crdm_sure_amt2', -5), ('crdm_sure_p2', 100), ('crdm_lott_top2', 0), ('crdm_lott_bot2', -8), ('crdm_lott_p2', 75), ('crdm_amb_lev2', 0), ('crdm_domain2', 'loss'), ('crdm_img2', 'risk_blue_75.bmp'), ('crdm_nonzero_side2', 'bottom')]),
      OrderedDict([('crdm_sure_amt2', -5), ('crdm_sure_p2', 100), ('crdm_lott_top2', -20), ('crdm_lott_bot2', 0), ('crdm_lott_p2', 75), ('crdm_amb_lev2', 0), ('crdm_domain2', 'loss'), ('crdm_img2', 'risk_red_75.bmp'), ('crdm_nonzero_side2', 'top')]),
      OrderedDict([('crdm_sure_amt2', -5), ('crdm_sure_p2', 100), ('crdm_lott_top2', 0), ('crdm_lott_bot2', -40), ('crdm_lott_p2', 75), ('crdm_amb_lev2', 0), ('crdm_domain2', 'loss'), ('crdm_img2', 'risk_blue_75.bmp'), ('crdm_nonzero_side2', 'bottom')])]
    Routine crdm_pract2_trial
    Routine crdm_pract2_feedback
    Routine crdm_pract2_conf
    Routine crdm_pract2_iti
  LoopTerminator crdm_pract2_trials
  Routine crdm_trial_instr
  Routine crdm_init_fix
  LoopInitiator crdm_trials loopType="TrialHandler"
    conditionsFile = crdm_gen_trials_idx.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('crdm_trial_idx', 0), ('crdm_nonzero_side', 'top')]),
      OrderedDict([('crdm_trial_idx', 1), ('crdm_nonzero_side', 'bottom')]),
      OrderedDict([('crdm_trial_idx', 2), ('crdm_nonzero_side', 'top')]),
      OrderedDict([('crdm_trial_idx', 3), ('crdm_nonzero_side', 'bottom')]),
      OrderedDict([('crdm_trial_idx', 4), ('crdm_nonzero_side', 'top')]),
      OrderedDict([('crdm_trial_idx', 5), ('crdm_nonzero_side', 'bottom')]),
      OrderedDict([('crdm_trial_idx', 6), ('crdm_nonzero_side', 'top')]),
      OrderedDict([('crdm_trial_idx', 7), ('crdm_nonzero_side', 'bottom')]),
      OrderedDict([('crdm_trial_idx', 8), ('crdm_nonzero_side', 'top')]),
      OrderedDict([('crdm_trial_idx', 9), ('crdm_nonzero_side', 'bottom')]),
      OrderedDict([('crdm_trial_idx', 10), ('crdm_nonzero_side', 'top')]),
      OrderedDict([('crdm_trial_idx', 11), ('crdm_nonzero_side', 'bottom')]),
      OrderedDict([('crdm_trial_idx', 12), ('crdm_nonzero_side', 'top')]),
      OrderedDict([('crdm_trial_idx', 13), ('crdm_nonzero_side', 'bottom')]),
      OrderedDict([('crdm_trial_idx', 14), ('crdm_nonzero_side', 'top')]),
      OrderedDict([('crdm_trial_idx', 15), ('crdm_nonzero_side', 'bottom')]),
      OrderedDict([('crdm_trial_idx', 16), ('crdm_nonzero_side', 'top')]),
      OrderedDict([('crdm_trial_idx', 17), ('crdm_nonzero_side', 'bottom')]),
      OrderedDict([('crdm_trial_idx', 18), ('crdm_nonzero_side', 'top')]),
      OrderedDict([('crdm_trial_idx', 19), ('crdm_nonzero_side', 'bottom')]),
      OrderedDict([('crdm_trial_idx', 20), ('crdm_nonzero_side', 'top')]),
      OrderedDict([('crdm_trial_idx', 21), ('crdm_nonzero_side', 'bottom')])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
    Routine crdm_trial
    Routine crdm_feedback
    Routine crdm_conf
    Routine crdm_trials_iti
  LoopTerminator crdm_trials
  Routine crdm_end
  Routine crdm_bonus
