PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s' % (expInfo['participant'], expInfo['date'])
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['idm_survey1.xlsx', 'idm_survey2.xlsx', 'cpdm/arrow.png', 'cpdm/cpdm_keys.png', 'cpdm/cpdm_practice.xlsx', 'cpdm/cpdm_run_type-high.xlsx', 'cpdm/cpdm_run_type.xlsx', 'cpdm/cpdm-1contrast.xlsx', 'cpdm/cpdm-5contrasts.xlsx', 'cpdm/cpdm-test1.xlsx', 'crdm/ambig_24.bmp', 'crdm/ambig_50.bmp', 'crdm/ambig_74.bmp', 'crdm/crdm_2key.png', 'crdm/crdm_4key.png', 'crdm/crdm_gen_trials_idx.csv', 'crdm/crdm_practice1.csv', 'crdm/crdm_practice2.csv', 'crdm/crdm_questplus_trials.csv', 'crdm/risk_blue_13.bmp', 'crdm/risk_blue_25.bmp', 'crdm/risk_blue_38.bmp', 'crdm/risk_blue_50.bmp', 'crdm/risk_blue_75.bmp', 'crdm/risk_red_13.bmp', 'crdm/risk_red_25.bmp', 'crdm/risk_red_38.bmp', 'crdm/risk_red_50.bmp', 'crdm/risk_red_75.bmp', 'cdd/cdd_2key.png', 'cdd/cdd_4key.png', 'cdd/cdd_gen_trials_idx.csv', 'cdd/cdd_practice1.csv', 'cdd/cdd_practice2.csv', 'cdd/cdd_qp_trials.csv']
  Screen = 1
  Units = height
  Use version = 2023.2.2
  Window size (pixels) = [1728, 1117]
  expName = idm_ado_v1
  exportHTML = manually
  keyboardBackend = Pyglet
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Routines
  Routine cpdm_init_fix
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    PolygonComponent cpdm_init_fix_poly
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine cpdm_pract_trial
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    CodeComponent cpdm_pract_trial_code
      Code Type = JS
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      Begin JS Experiment:
        left_high_color = [0, 0, 0];
        left_low_color = [0, 0, 0];
        right_high_color = [0, 0, 0];
        right_low_color = [0, 0, 0];

        cpdm_rand_num = 0;
      Begin JS Routine:
        my_loop = eval(cpdm_practice_loop_name);
        cpdm_trial_acc = 0;
        cpdm_trial_conf = 0;
        left_high_color = [0, 0, 0];
        left_low_color = [0, 0, 0];
        right_high_color = [0, 0, 0];
        right_low_color = [0, 0, 0];
        is_clockwise = false;
        if ((cpdm_gabor_orient > 0.0)) {
            is_clockwise = true;
        } else {
            if ((cpdm_gabor_orient === 0.0)) {
                cpdm_rand_num = random.randint(0, 2);
                if ((cpdm_rand_num === 1)) {
                    is_clockwise = true;
                } else {
                    is_clockwise = false;
                }
            }
        }
      Each JS Frame:
        cpdm_key = cpdm_pract_trial_resp.keys;
        if (!(cpdm_key === undefined) && (cpdm_key.length == 1)) {
            if ((cpdm_key === "q")) {
                cpdm_trial_conf = 1;
                if ((is_clockwise === false)) {
                    left_high_color = "green";
                    cpdm_trial_acc = 1;
                } else {
                    left_high_color = "red";
                }
            } else {
                if ((cpdm_key === "a")) {
                    if ((is_clockwise === false)) {
                        left_low_color = "green";
                        cpdm_trial_acc = 1;
                    } else {
                        left_low_color = "red";
                    }
                } else {
                    if ((cpdm_key === "p")) {
                        cpdm_trial_conf = 1;
                        if ((is_clockwise === true)) {
                            right_high_color = "green";
                            cpdm_trial_acc = 1;
                        } else {
                            right_high_color = "red";
                        }
                    } else {
                        if ((cpdm_key === "l")) {
                            if ((is_clockwise === true)) {
                                right_low_color = "green";
                                cpdm_trial_acc = 1;
                            } else {
                                right_low_color = "red";
                            }
                        }
                    }
                }
            }
        }
      End JS Routine:
        my_loop.addData("cpdm_pract_acc", cpdm_trial_acc);
        my_loop.addData("cpdm_pract_conf", cpdm_trial_conf);
        my_loop.addData("cpdm_trial_type", "practice");

        left_high_color = [0, 0, 0];
        left_low_color = [0, 0, 0];
        right_high_color = [0, 0, 0];
        right_low_color = [0, 0, 0];

        cpdm_pract_trial_left_high_poly.setFillColor(new util.Color(left_high_color), false);
        cpdm_pract_trial_left_low_poly.setFillColor(new util.Color(left_low_color), false);
        cpdm_pract_trial_right_high_poly.setFillColor(new util.Color(right_high_color), false);
        cpdm_pract_trial_right_low_poly.setFillColor(new util.Color(right_low_color), false);
    GratingComponent cpdm_pract_trial_gabor
      contrast [set every repeat] = cpdm_gabor_contrast
      mask = gauss
      ori [set every repeat] = cpdm_gabor_orient
      saveStartStop = False
      sf = 6
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      tex = sin
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    PolygonComponent cpdm_pract_trial_left_high_poly
      fillColor [set every frame] = $left_high_color
      lineWidth = 15
      pos = (-0.45, 0.25)
      saveStartStop = False
      shape = rectangle
      size = (0.35, 0.35)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2
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    PolygonComponent cpdm_pract_trial_right_high_poly
      fillColor [set every frame] = $right_high_color
      lineWidth = 15
      pos = (0.45, 0.25)
      saveStartStop = False
      shape = rectangle
      size = (0.35, 0.35)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2
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    PolygonComponent cpdm_pract_trial_left_low_poly
      fillColor [set every frame] = $left_low_color
      lineWidth = 15
      pos = (-0.45, -0.25)
      saveStartStop = False
      shape = rectangle
      size = (0.35, 0.35)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2
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    PolygonComponent cpdm_pract_trial_right_low_poly
      fillColor [set every frame] = $right_low_color
      lineWidth = 15
      pos = (0.45, -0.25)
      saveStartStop = False
      shape = rectangle
      size = (0.35, 0.35)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2
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    TextComponent cpdm_pract_trial_left_high_txt
      letterHeight = 0.035
      pos = (-0.45, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2
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      text:
        LEFT

        HIGH Confidence

        \$9 or \$0
    TextComponent cpdm_pract_trial_right_high_txt
      letterHeight = 0.035
      pos = (0.45, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2
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      text:
        RIGHT

        HIGH Confidence

        \$9 or \$0
    TextComponent cpdm_pract_trial_left_low_txt
      letterHeight = 0.035
      pos = (-0.45, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2
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      text:
        LEFT

        LOW Confidence

        \$8 or \$6
    TextComponent cpdm_pract_trial_right_low_txt
      letterHeight = 0.035
      pos = (0.45, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2
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      text:
        RIGHT

        LOW Confidence

        \$8 or \$6
    KeyboardComponent cpdm_pract_trial_resp
      allowedKeys = 'q', 'a', 'p', 'l'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2
      store = first key
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  Routine cpdm_pract_instr
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    TextComponent cpdm_pract_instr_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Visual Decision Making Task *
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    TextComponent cpdm_pract_instr_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        Let's practice!

        In these example trials, the box you select will turn green if you make the correct choice regarding tilt of the pattern. If you are incorrect, the box you select will turn red. Feedback about performance during the practice trials is to help you understand the task, but will not be given during the actual experiment.
    TextComponent cpdm_pract_instr_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to begin.
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    KeyboardComponent cpdm_pract_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cpdm_trial_instr
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    TextComponent cpdm_trial_instr_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Visual Decision Making Task *
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    TextComponent cpdm_trial_instr_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        Now that you have practiced, the actual task will begin.

        In the following four sections, you will be presented with a series of trials similar to those you just practiced. Here, you will not receive feedback about your performance. The option you select will turn light gray to indicate your choice. For each trial, you have 2 seconds to make your decision.

        When a white cross appears, please focus your attention on the center of the screen.
    TextComponent cpdm_trial_instr_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to begin.
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    KeyboardComponent cpdm_trial_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cpdm_run_setter
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    CodeComponent cpdm_run_setter_code
      Code Type = JS
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      Begin JS Routine:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        run_resps = [];
        cpdm_catch_trials = [];

        //if (_pj.in_es6("low_vol", cpdm_run_dimension)) {
        //    run_schedule = "cpdm/cpdm-1contrast.xlsx";
        //} else {
        //    run_schedule = "cpdm/cpdm-5contrasts.xlsx";
        //}

        if (_pj.in_es6("low_risk", cpdm_run_dimension)) {
            left_resp_txt = "LEFT \n \n HIGH Confidence \n \n $9 or $0";
            right_resp_txt = "RIGHT \n \n HIGH Confidence \n \n $9 or $0";
        } else {
            left_resp_txt = "LEFT \n \n HIGH Confidence \n \n $13 or $0";
            right_resp_txt = "RIGHT \n \n HIGH Confidence \n \n $13 or $0";
        }
        cpdm_iti_list = function () {
            var _pj_a = [], _pj_b = util.range(200);
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var i = _pj_b[_pj_c];
                _pj_a.push(random.random());
            }
            return _pj_a;
        }
        .call(this);
        cpdm_s = util.sum(cpdm_iti_list);
        cpdm_iti_list = function () {
            var _pj_a = [], _pj_b = cpdm_iti_list;
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var i = _pj_b[_pj_c];
                _pj_a.push(((i * 200) / cpdm_s));
            }
            return _pj_a;
        }
        .call(this);
  Routine cpdm_loop_instr
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    CodeComponent cpdm_loop_instr_code
      Code Type = Auto->JS
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      Begin Experiment:
        loop_spec_instr = ""
        run_counter = 1
      Begin Routine:
        if "low_risk" in cpdm_run_dimension:
            corr_high_txt = "Correct \n High Confidence \n $9"
        else:
            corr_high_txt = "Correct \n High Confidence \n $13"
      End Routine:
        run_counter += 1
    TextComponent cpdm_loop_instr_code2
      letterHeight = 0.06
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Block " + str(run_counter)
      wrapWidth = 1.25
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    PolygonComponent cpdm_loop_instr_corr_high_poly
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 15
      pos = (-0.125, 0.125)
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    PolygonComponent cpdm_loop_instr_right_high_poly
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 15
      pos = (0.125, 0.125)
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.25)
      startVal [time (s)] = 0
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    PolygonComponent cpdm_loop_instr_left_low_poly
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 15
      pos = (-0.125, -0.125)
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    PolygonComponent cpdm_loop_instr_right_low_poly
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 15
      pos = (0.125, -0.125)
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent cpdm_loop_instr_corr_high_txt
      color = 0.1216, 0.4745, 0.1216
      letterHeight = 0.03
      pos = (-0.125, 0.125)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $corr_high_txt
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    TextComponent cpdm_loop_instr_incorr_high_txt
      color = salmon
      letterHeight = 0.03
      pos = (0.125, 0.125)
      saveStartStop = False
      startVal [time (s)] = 0
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      text:
        Incorrect
        High Confidence
        \$0
    TextComponent cpdm_loop_instr_corr_low_txt
      color = darkseagreen
      letterHeight = 0.03
      pos = (-0.125, -0.125)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Correct
        Low Confidence
        \$8
    TextComponent cpdm_loop_instr_incorr_low
      color = salmon
      letterHeight = 0.03
      pos = (0.125, -0.125)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Incorrect
        Low Confidence
        \$6
    TextComponent cpdm_loop_instr_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent cpdm_loop_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cpdm_trial
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    CodeComponent cpdm_trial_code
      Code Type = JS
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      Begin JS Experiment:
        cpdm_delta_time = 0;
        cpdm_trial_counter = 1;
      Begin JS Routine:
        my_loop = eval(cpdm_loop_name);
        cpdm_stop_timer = null;
        cpdm_stopped_time = 0;
        cpdm_trial_acc = 0;
        cpdm_trial_conf = 0;
        left_high_color = [0, 0, 0];
        left_low_color = [0, 0, 0];
        right_high_color = [0, 0, 0];
        right_low_color = [0, 0, 0];
        is_clockwise = false;
        if ((cpdm_gabor_orient > 0.0)) {
            is_clockwise = true;
        } else {
            if ((cpdm_gabor_orient === 0.0)) {
                cpdm_rand_num = random.randint(0, 2);
                if ((cpdm_rand_num === 1)) {
                    is_clockwise = true;
                } else {
                    is_clockwise = false;
                }
            }
        }
      Each JS Frame:
        cpdm_key = cpdm_trial_resp.keys;
        if (!(cpdm_key === undefined) && (cpdm_key.length == 1)) {
            if ((cpdm_stop_timer === null)) {
                cpdm_stop_timer = new util.Clock();
            } else {
                cpdm_stopped_time = cpdm_stop_timer.getTime();
                if ((cpdm_stopped_time >= 0.5)) {
                    continueRoutine = false;
                }
            }
            if ((cpdm_key === "q")) {
                cpdm_trial_conf = 1;
                if ((is_clockwise === false)) {
                    left_high_color = "darkgray";
                    cpdm_trial_acc = 1;
                } else {
                    left_high_color = "darkgray";
                }
            } else {
                if ((cpdm_key === "a")) {
                    if ((is_clockwise === false)) {
                        left_low_color = "darkgray";
                        cpdm_trial_acc = 1;
                    } else {
                        left_low_color = "darkgray";
                    }
                } else {
                    if ((cpdm_key === "p")) {
                        cpdm_trial_conf = 1;
                        if ((is_clockwise === true)) {
                            right_high_color = "darkgray";
                            cpdm_trial_acc = 1;
                        } else {
                            right_high_color = "darkgray";
                        }
                    } else {
                        if ((cpdm_key === "l")) {
                            if ((is_clockwise === true)) {
                                right_low_color = "darkgray";
                                cpdm_trial_acc = 1;
                            } else {
                                right_low_color = "darkgray";
                            }
                        }
                    }
                }
            }
        }
      End JS Routine:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        my_loop.addData("cpdm_run_dimension", cpdm_run_dimension);
        my_loop.addData("cpdm_acc", cpdm_trial_acc);
        my_loop.addData("cpdm_conf", cpdm_trial_conf);
        my_loop.addData("cpdm_trial_type", "task");
        cpdm_key = cpdm_trial_resp.keys;
        if (_pj.in_es6(cpdm_key, ["q", "a", "p", "l"])) {
            run_resps.push(cpdm_key);
        }
        if ((((cpdm_trial_resp.rt) === undefined) || (cpdm_trial_resp.rt >= (2 - 0.5)))) {
            cpdm_delta_time = 0;
        } else {
            cpdm_delta_time = Math.max(0, (2 - (cpdm_trial_resp.rt + cpdm_stopped_time)));
        }
        if (_pj.in_es6("low_risk", cpdm_run_dimension)) {
            if ((cpdm_key === "q")) {
                if ((is_clockwise === false)) {
                    my_loop.addData("cpdm_conf2", "high");
                    my_loop.addData("cpdm_money", 9);
                    if ((cpdm_catch_trial === 1)) {
                        cpdm_catch_trials.push(1);
                    }
                    if ((cpdm_gabor_orient !== 0.0)) {
                        cpdm_bonus_trials.push(["CPDM", 9, "CORRECT", "HIGH"]);
                    }
                } else {
                    my_loop.addData("cpdm_conf2", "high");
                    my_loop.addData("cpdm_money", 0);
                    if ((cpdm_catch_trial === 1)) {
                        cpdm_catch_trials.push(0);
                    }
                    if ((cpdm_gabor_orient !== 0.0)) {
                        cpdm_bonus_trials.push(["CPDM", 0, "INCORRECT", "HIGH"]);
                    }
                }
            } else {
                if ((cpdm_key === "a")) {
                    if ((is_clockwise === false)) {
                        my_loop.addData("cpdm_conf2", "low");
                        my_loop.addData("cpdm_money", 8);
                        if ((cpdm_catch_trial === 1)) {
                            cpdm_catch_trials.push(1);
                        }
                        if ((cpdm_gabor_orient !== 0.0)) {
                            cpdm_bonus_trials.push(["CPDM", 8, "CORRECT", "LOW"]);
                        }
                    } else {
                        my_loop.addData("cpdm_conf2", "low");
                        my_loop.addData("cpdm_money", 6);
                        if ((cpdm_catch_trial === 1)) {
                            cpdm_catch_trials.push(0);
                        }
                        if ((cpdm_gabor_orient !== 0.0)) {
                            cpdm_bonus_trials.push(["CPDM", 6, "INCORRECT", "LOW"]);
                        }
                    }
                } else {
                    if ((cpdm_key === "p")) {
                        if ((is_clockwise === true)) {
                            my_loop.addData("cpdm_conf2", "high");
                            my_loop.addData("cpdm_money", 9);
                            if ((cpdm_catch_trial === 1)) {
                                cpdm_catch_trials.push(1);
                            }
                            if ((cpdm_gabor_orient !== 0.0)) {
                                cpdm_bonus_trials.push(["CPDM", 9, "CORRECT", "HIGH"]);
                            }
                        } else {
                            my_loop.addData("cpdm_conf2", "high");
                            my_loop.addData("cpdm_money", 0);
                            if ((cpdm_catch_trial === 1)) {
                                cpdm_catch_trials.push(0);
                            }
                            if ((cpdm_gabor_orient !== 0.0)) {
                                cpdm_bonus_trials.push(["CPDM", 0, "INCORRECT", "HIGH"]);
                            }
                        }
                    } else {
                        if ((cpdm_key === "l")) {
                            if ((is_clockwise === true)) {
                                my_loop.addData("cpdm_conf2", "low");
                                my_loop.addData("cpdm_money", 8);
                                if ((cpdm_catch_trial === 1)) {
                                    cpdm_catch_trials.push(1);
                                }
                                if ((cpdm_gabor_orient !== 0.0)) {
                                    cpdm_bonus_trials.push(["CPDM", 8, "CORRECT", "LOW"]);
                                }
                            } else {
                                my_loop.addData("cpdm_conf2", "low");
                                my_loop.addData("cpdm_money", 6);
                                if ((cpdm_catch_trial === 1)) {
                                    cpdm_catch_trials.push(0);
                                }
                                if ((cpdm_gabor_orient !== 0.0)) {
                                    cpdm_bonus_trials.push(["CPDM", 6, "INCORRECT", "LOW"]);
                                }
                            }
                        }
                    }
                }
            }
        } else {
            if ((cpdm_key === "q")) {
                if ((is_clockwise === false)) {
                    my_loop.addData("cpdm_conf2", "high");
                    my_loop.addData("cpdm_money", 13);
                    if ((cpdm_catch_trial === 1)) {
                        cpdm_catch_trials.push(1);
                    }
                    if ((cpdm_gabor_orient !== 0.0)) {
                        cpdm_bonus_trials.push(["CPDM", 13, "CORRECT", "HIGH"]);
                    }
                } else {
                    my_loop.addData("cpdm_conf2", "high");
                    my_loop.addData("cpdm_money", 0);
                    if ((cpdm_catch_trial === 1)) {
                        cpdm_catch_trials.push(0);
                    }
                    if ((cpdm_gabor_orient !== 0.0)) {
                        cpdm_bonus_trials.push(["CPDM", 0, "INCORRECT", "HIGH"]);
                    }
                }
            } else {
                if ((cpdm_key === "a")) {
                    if ((is_clockwise === false)) {
                        my_loop.addData("cpdm_conf2", "low");
                        my_loop.addData("cpdm_money", 8);
                        if ((cpdm_catch_trial === 1)) {
                            cpdm_catch_trials.push(1);
                        }
                        if ((cpdm_gabor_orient !== 0.0)) {
                            cpdm_bonus_trials.push(["CPDM", 8, "CORRECT", "LOW"]);
                        }
                    } else {
                        my_loop.addData("cpdm_conf2", "low");
                        my_loop.addData("cpdm_money", 6);
                        if ((cpdm_catch_trial === 1)) {
                            cpdm_catch_trials.push(0);
                        }
                        if ((cpdm_gabor_orient !== 0.0)) {
                            cpdm_bonus_trials.push(["CPDM", 6, "INCORRECT", "LOW"]);
                        }
                    }
                } else {
                    if ((cpdm_key === "p")) {
                        if ((is_clockwise === true)) {
                            my_loop.addData("cpdm_conf2", "high");
                            my_loop.addData("cpdm_money", 13);
                            if ((cpdm_catch_trial === 1)) {
                                cpdm_catch_trials.push(1);
                            }
                            if ((cpdm_gabor_orient !== 0.0)) {
                                cpdm_bonus_trials.push(["CPDM", 13, "CORRECT", "HIGH"]);
                            }
                        } else {
                            my_loop.addData("cpdm_conf2", "high");
                            my_loop.addData("cpdm_money", 0);
                            if ((cpdm_catch_trial === 1)) {
                                cpdm_catch_trials.push(0);
                            }
                            if ((cpdm_gabor_orient !== 0.0)) {
                                cpdm_bonus_trials.push(["CPDM", 0, "INCORRECT", "HIGH"]);
                            }
                        }
                    } else {
                        if ((cpdm_key === "l")) {
                            if ((is_clockwise === true)) {
                                my_loop.addData("cpdm_conf2", "low");
                                my_loop.addData("cpdm_money", 8);
                                if ((cpdm_catch_trial === 1)) {
                                    cpdm_catch_trials.push(1);
                                }
                                if ((cpdm_gabor_orient !== 0.0)) {
                                    cpdm_bonus_trials.push(["CPDM", 8, "CORRECT", "LOW"]);
                                }
                            } else {
                                my_loop.addData("cpdm_conf2", "low");
                                my_loop.addData("cpdm_money", 6);
                                if ((cpdm_catch_trial === 1)) {
                                    cpdm_catch_trials.push(0);
                                }
                                if ((cpdm_gabor_orient !== 0.0)) {
                                    cpdm_bonus_trials.push(["CPDM", 6, "INCORRECT", "LOW"]);
                                }
                            }
                        }
                    }
                }
            }
        }
    GratingComponent cpdm_trial_gabor
      contrast [set every repeat] = cpdm_gabor_contrast
      mask = gauss
      ori [set every repeat] = cpdm_gabor_orient
      sf = 6
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      tex = sin
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    PolygonComponent cpdm_trial_left_high_poly
      fillColor [set every frame] = $left_high_color
      lineWidth = 15
      pos = (-0.45, 0.25)
      saveStartStop = False
      shape = rectangle
      size = (0.35, 0.35)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2
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    PolygonComponent cpdm_trial_right_high_poly
      fillColor [set every frame] = $right_high_color
      lineWidth = 15
      pos = (0.45, 0.25)
      saveStartStop = False
      shape = rectangle
      size = (0.35, 0.35)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2
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    PolygonComponent cpdm_trial_left_low_poly
      fillColor [set every frame] = $left_low_color
      lineWidth = 15
      pos = (-0.45, -0.25)
      saveStartStop = False
      shape = rectangle
      size = (0.35, 0.35)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2
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    PolygonComponent cpdm_trial_right_low_poly
      fillColor [set every frame] = $right_low_color
      lineWidth = 15
      pos = (0.45, -0.25)
      saveStartStop = False
      shape = rectangle
      size = (0.35, 0.35)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2
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    TextComponent cpdm_trial_left_high_txt
      letterHeight = 0.035
      pos = (-0.45, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2
      text [set every repeat] = $left_resp_txt
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    TextComponent cpdm_trial_right_high_txt
      letterHeight = 0.035
      pos = (0.45, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2
      text [set every repeat] = $right_resp_txt
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    TextComponent cpdm_trial_left_low_txt
      letterHeight = 0.035
      pos = (-0.45, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2
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      text:
        LEFT

        LOW Confidence

        \$8 or \$6
    TextComponent cpdm_trial_right_low_txt
      letterHeight = 0.035
      pos = (0.45, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2
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      text:
        RIGHT

        LOW Confidence

        \$8 or \$6
    KeyboardComponent cpdm_trial_resp
      allowedKeys = 'q', 'a', 'p', 'l'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2
      store = first key
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  Routine cpdm_bonus
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    CodeComponent cpdm_bonus_code
      Code Type = JS
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      Begin JS Routine:
        if ((random_exp === "cpdm")) {
            continueRoutine = true;
        } else {
            continueRoutine = false;
        }
        exp = [];
        money = [];
        acc = [];
        conf = [];
        acc_color = [0, 0, 0];
        idx = Number.parseInt((random.random() * cpdm_bonus_trials.length));
        [exp, money, acc, conf] = cpdm_bonus_trials[idx];
        if ((random_exp === "cpdm")) {
            my_loop.addData("cpdm_bonus_amt", money);
            my_loop.addData("cpdm_bonus_acc", acc);
            my_loop.addData("cpdm_bonus_conf", conf);
        }
        if ((acc === "CORRECT")) {
            acc_color = [0.1216, 0.4745, 0.1216];
        } else {
            acc_color = [0.9608, 0.0039, (- 0.1059)];
        }
    TextComponent cpdm_bonus_thanks_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.35
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      text:
        Your randomly selected *bonus earnings trial* is from the
        Visual Decision Making Task!
    TextComponent cpdm_bonus_earnings_txt
      letterHeight = 0.04
      pos = (0, 0.10)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = In this trial, you earned:
      wrapWidth = 1.25
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    TextComponent cpdm_bonus_amt_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $str("$"+str(format(money)))
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    TextComponent cpdm_bonus_answer_txt
      letterHeight = 0.04
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Your answer was
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    TextComponent cpdm_bonus_acc_txt
      color [set every repeat] = $acc_color
      letterHeight = 0.04
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $acc
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    TextComponent cpdm_bonus_and_txt
      letterHeight = 0.04
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = and
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    TextComponent cpdm_bonus_conf_txt
      color = 0.0588, 0.6157, 0.9608
      letterHeight = 0.04
      pos = (0, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $conf + " CONFIDENCE"
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    TextComponent cpdm_bonus_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to receive your *COMPLETION CODE*
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    KeyboardComponent cpdm_bonus_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_feedback
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    CodeComponent crdm_feedback_code
      Code Type = JS
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      Begin JS Routine:
        if ((crdm_key === undefined)) {
            crdm_msg = "NO RESPONSE";
        } else {
            if (crdm_sure_key) {
                crdm_msg = ("CERTAIN $" + format(crdm_sure_amt.toString()));
            } else {
                crdm_msg = "LOTTERY";
            }
        }
    TextComponent crdm_feedback_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $crdm_msg
      wrapWidth = 1.5
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  Routine crdm_conf
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    CodeComponent crdm_conf_code
      Code Type = JS
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      Begin JS Routine:
        if ((crdm_key === undefined)) {
            continueRoutine = false;
        }
        conf1_color = [0, 0, 0];
        conf2_color = [0, 0, 0];
        conf3_color = [0, 0, 0];
        conf4_color = [0, 0, 0];
      Each JS Frame:
        crdm_conf_key = crdm_conf_resp.keys;
        if (!(crdm_conf_key == undefined) && (crdm_conf_key.length === 1)) {
            if ((crdm_conf_key === "1")) {
                conf1_color = "darkgray";
                conf2_color = [0, 0, 0];
                conf3_color = [0, 0, 0];
                conf4_color = [0, 0, 0];
            } else {
                if ((crdm_conf_key === "2")) {
                    conf1_color = [0, 0, 0];
                    conf2_color = "darkgray";
                    conf3_color = [0, 0, 0];
                    conf4_color = [0, 0, 0];
                } else {
                    if ((crdm_conf_key === "3")) {
                        conf1_color = [0, 0, 0];
                        conf2_color = [0, 0, 0];
                        conf3_color = "darkgray";
                        conf4_color = [0, 0, 0];
                    } else {
                        if ((crdm_conf_key === "4")) {
                            conf1_color = [0, 0, 0];
                            conf2_color = [0, 0, 0];
                            conf3_color = [0, 0, 0];
                            conf4_color = "darkgray";
                        }
                    }
                }
            }
        }
      End JS Routine:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        if (!(crdm_conf_key == undefined) && (crdm_conf_key.length === 1)) {
            if ((Array.isArray(crdm_conf_key))) {
                if (_pj.in_es6(crdm_conf_key.slice((- 1))[0], ["1", "2", "3", "4"])) {
                    crdm_conf_resps.push(crdm_conf_key);
                }
            } else {
                if (_pj.in_es6(crdm_conf_key, ["1", "2", "3", "4"])) {
                    crdm_conf_resps.push(crdm_conf_key);
                }
            }
        }
        conf1_color = [0, 0, 0];
        conf2_color = [0, 0, 0];
        conf3_color = [0, 0, 0];
        conf4_color = [0, 0, 0];

        crdm_conf1.setFillColor(new util.Color(conf1_color), false);
        crdm_conf2.setFillColor(new util.Color(conf2_color), false);
        crdm_conf3.setFillColor(new util.Color(conf3_color), false);
        crdm_conf4.setFillColor(new util.Color(conf4_color), false);
    TextComponent crdm_conf_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = How confident are you in your choice?
      wrapWidth = 1.5
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    PolygonComponent crdm_conf1
      fillColor [set every frame] = $conf1_color
      lineWidth = 10
      pos = (-0.6, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent crdm_conf1_txt
      letterHeight = 0.04
      pos = (-0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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      text:
        Not at all
        confident

        1
    PolygonComponent crdm_conf2
      fillColor [set every frame] = $conf2_color
      lineWidth = 10
      pos = (-0.2, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent crdm_conf2_txt
      letterHeight = 0.04
      pos = (-0.2, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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      text:
        Less
        confident

        2
    PolygonComponent crdm_conf3
      fillColor [set every frame] = $conf3_color
      lineWidth = 10
      pos = (0.2, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent crdm_conf3_txt
      letterHeight = 0.04
      pos = (0.2, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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      text:
        Somewhat
        confident

        3
    PolygonComponent crdm_conf4
      fillColor [set every frame] = $conf4_color
      lineWidth = 10
      pos = (0.6, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent crdm_conf4_txt
      letterHeight = 0.04
      pos = (0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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      text:
        Very
        confident

        4
    KeyboardComponent crdm_conf_resp
      allowedKeys = '1', '2', '3', '4'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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  Routine crdm_trial_instr
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    CodeComponent crdm_trial_instr_code
      Code Type = JS
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      Begin JS Routine:
        crdm_task_resps = [];
        crdm_conf_resps = [];
        crdm_catch_trials = [];
        crdm_iti_list = function () {
            var _pj_a = [], _pj_b = util.range(72);
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var i = _pj_b[_pj_c];
                _pj_a.push(random.random());
            }
            return _pj_a;
        }
        .call(this);
        crdm_s = util.sum(crdm_iti_list);
        crdm_iti_list = function () {
            var _pj_a = [], _pj_b = crdm_iti_list;
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var i = _pj_b[_pj_c];
                _pj_a.push(((i * 72) / crdm_s));
            }
            return _pj_a;
        }
        .call(this);
    TextComponent crdm_trial_instr_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Risk & Ambiguity Task *
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    TextComponent crdm_trial_instr_txt
      letterHeight = 0.03
      pos = (0, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        Now that you have practiced, the actual task will begin.

        Make your choice between the certain outcome and lottery as soon as you see the green circle. You will have 3 seconds to consider and 2 seconds to respond. You will then have an additional 2 seconds to rate your choice confidence.

        When a white cross appears, please focus your attention on the center of the screen.
    TextComponent crdm_trial_instr_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to begin.
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    KeyboardComponent crdm_trial_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_trial
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    CodeComponent crdm_trial_JS
      Code Type = JS
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      Begin JS Experiment:
        //var crdm_sure_amt, crdm_sure_p, crdm_lott_top, crdm_lott_bot, crdm_lott_p, crdm_amb_lev, crdm_domain, crdm_img;
        //var delta_time, sure_pos, sure_resp, crdm_msg, pos, resp, task_nonresp_ct, conf_nonresp_ct;

        crdm_delta_time = 0; //used in variable ITI
        crdm_sure_pos = []; //position of certain option
        crdm_sure_resp = []; //response key for certain option
        crdm_msg = ""; //feedback message string
        crdm_pos = [[(- 0.5), 0], [0.5, 0]]; //left/right screen locations
        crdm_resp = ["1", "2"]; //1 = left, 2 = right
        crdm_task_nonresp_ct = 0;
        crdm_conf_nonresp_ct = 0;
      Begin JS Routine:
        my_loop = eval(crdm_loop_name);
        crdm_stop_timer = null;
        crdm_stopped_time = 0;
        crdm_lott_outcome = 0;
        crdm_conf_key = [];
        crdm_idx = random.randint(0, 2); //Math.round(Math.random() * (1- 0) + 0);
        crdm_sure_pos = crdm_pos[crdm_idx];
        crdm_sure_resp = crdm_resp[crdm_idx];

        //assign QuestPlus generated variables for trial presentation
        crdm_sure_amt = crdm_trials_dict["crdm_sure_amt"][crdm_trial_idx];
        crdm_sure_p = 100;
        crdm_lott_p = crdm_trials_dict["crdm_lott_p"][crdm_trial_idx];
        crdm_amb_lev = crdm_trials_dict["crdm_amb_lev"][crdm_trial_idx];
        crdm_domain = crdm_trials_dict["crdm_domain"][crdm_trial_idx];
        crdm_deltaSV = crdm_trials_dict["crdm_delta_sv"][crdm_trial_idx];
        crdm_safeSV = crdm_trials_dict["crdm_safe_sv"][crdm_trial_idx];
        crdm_lottSV = crdm_trials_dict["crdm_lott_sv"][crdm_trial_idx];
        crdm_lott_top = "";
        crdm_lott_bot = "";
        crdm_img = "";

        if (crdm_nonzero_side == "top") {
            crdm_lott_top = crdm_trials_dict["crdm_lott"][crdm_trial_idx];
            crdm_lott_bot = 0;
            if (crdm_trials_dict["crdm_amb_lev"][crdm_trial_idx] != 0) { //check if ambiguity trial
                crdm_img = "ambig_" + parseInt(crdm_trials_dict["crdm_amb_lev"][crdm_trial_idx] * 100) + ".bmp";
            } else {
                crdm_img = "risk_red_" + parseInt(crdm_trials_dict["crdm_lott_p"][crdm_trial_idx] * 100) + ".bmp";
            }
        } else {
            crdm_lott_top = 0
            crdm_lott_bot = crdm_trials_dict["crdm_lott"][crdm_trial_idx];
            if (crdm_trials_dict["crdm_amb_lev"][crdm_trial_idx] != 0) { //check if ambiguity trial
                crdm_img = "ambig_" + parseInt(crdm_trials_dict["crdm_amb_lev"][crdm_trial_idx] * 100) + ".bmp";
            } else {
                crdm_img = "risk_blue_" + parseInt(crdm_trials_dict["crdm_lott_p"][crdm_trial_idx] * 100) + ".bmp";
            }
        }

        //save QuestPlus generated variables to output csv
        my_loop.addData("crdm_sure_amt", crdm_sure_amt);
        my_loop.addData("crdm_lott_top", crdm_lott_top);
        my_loop.addData("crdm_lott_bot", crdm_lott_bot);
        my_loop.addData("crdm_sure_p", crdm_sure_p);
        my_loop.addData("crdm_lott_p", crdm_lott_p);
        my_loop.addData("crdm_amb_lev", crdm_amb_lev);
        my_loop.addData("crdm_domain", crdm_domain);
        my_loop.addData("crdm_img", crdm_img);
        my_loop.addData("crdm_delta_SV", crdm_deltaSV); //lottery - safe
        my_loop.addData("crdm_safe_SV", crdm_safeSV); //SV for safe option
        my_loop.addData("crdm_lott_SV", crdm_lottSV); //SV for lottery option
      Each JS Frame:
        if (!(crdm_trial_resp.keys === undefined) && (crdm_trial_resp.keys.length === 1)) {
            if ((crdm_stop_timer === null)) {
                crdm_stop_timer = new util.Clock();
            } else {
                if ((crdm_stop_timer.getTime() >= 0.5)) {
                    continueRoutine = false;
                }
            }
        }
      End JS Routine:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);

        lott_outcome = 0;
        crdm_key = crdm_trial_resp.keys;
        crdm_sure_key = crdm_trial_resp.corr;
        my_loop.addData("crdm_trial_type", "task");
        if (_pj.in_es6(crdm_key, ["1", "2"])) {
            crdm_task_resps.push(crdm_key);
        }

        if ((((crdm_trial_resp.rt) === undefined) || (crdm_trial_resp.rt >= (2 - 0.5)))) {
            crdm_delta_time = 0;
        } else {
            crdm_delta_time = Math.max(0, (2 - (crdm_trial_resp.rt + crdm_stopped_time)));
        }
        if (!(crdm_key === undefined) && (crdm_key.length === 1)) {
            if ((crdm_sure_key === 1)) {
                crdm_bonus_trials.push(["crdm", "sure", crdm_sure_amt, crdm_sure_amt, crdm_img, crdm_lott_top, crdm_lott_bot, (- 1), crdm_nonzero_side, crdm_domain]);
                my_loop.addData("crdm_choice", 0);
                my_loop.addData("crdm_choice2", "sure");
                my_loop.addData("crdm_lott", -1);
                my_loop.addData("crdm_lott2", "sure");
                if ((crdm_domain === 1)) {
                    my_loop.addData("crdm_domain2", "gain");
                } else {
                    my.loop.addData("crdm_domain2", "loss");
                }

            } else {
                lott_outcome = random_weighted_choice([0, 1], [100 - Number.parseInt(crdm_lott_p * 100), Number.parseInt(crdm_lott_p * 100)]);
                my_loop.addData("crdm_choice", 1);
                my_loop.addData("crdm_choice2", "lott");
                my_loop.addData("crdm_lott", lott_outcome);
                if ((lott_outcome === 1)) {
                    my_loop.addData("crdm_lott2", "win");
                    if ((crdm_domain === 1)) { //gain
                        my_loop.addData("crdm_domain2", "gain");
                        if ((Number.parseInt(crdm_lott_top) !== 0)) {
                            crdm_bonus_trials.push(["crdm", "lott", crdm_lott_top, crdm_sure_amt, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_nonzero_side, crdm_domain]);
                        } else {
                            crdm_bonus_trials.push(["crdm", "lott", crdm_lott_bot, crdm_sure_amt, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_nonzero_side, crdm_domain]);
                        }
                    } else {
                        if ((crdm_domain === -1)) { //loss
                            my_loop.addData("crdm_domain2", "loss");
                            if ((Number.parseInt(crdm_lott_top) === 0)) {
                                crdm_bonus_trials.push(["crdm", "lott", crdm_lott_top, crdm_sure_amt, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_nonzero_side, crdm_domain]);
                            } else {
                                crdm_bonus_trials.push(["crdm", "lott", crdm_lott_bot, crdm_sure_amt, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_nonzero_side, crdm_domain]);
                            }
                        }
                    }
                } else {
                    my_loop.addData("crdm_lott2", "lose");
                    if ((crdm_domain === 1)) { //gain
                        my_loop.addData("crdm_domain2", "gain");
                        if ((Number.parseInt(crdm_lott_top) === 0)) {
                            crdm_bonus_trials.push(["crdm", "lott", crdm_lott_top, crdm_sure_amt, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_nonzero_side, crdm_domain]);
                        } else {
                            crdm_bonus_trials.push(["crdm", "lott", crdm_lott_bot, crdm_sure_amt, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_nonzero_side, crdm_domain]);
                        }
                    } else {
                        if ((crdm_domain === -1)) { //loss
                            my_loop.addData("crdm_domain2", "loss");
                            if ((Number.parseInt(crdm_lott_top) < 0)) {
                                crdm_bonus_trials.push(["crdm", "lott", crdm_lott_top, crdm_sure_amt, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_nonzero_side, crdm_domain]);
                            } else {
                                crdm_bonus_trials.push(["crdm", "lott", crdm_lott_bot, crdm_sure_amt, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_nonzero_side, crdm_domain]);
                            }
                        }
                    }
                }
            }
        }
    CodeComponent crdm_trial_code
      Code Type = Both
      disabled = True
      Begin Experiment:
        #used in variable ITI
        delta_time = 0
        #position of certain amount option
        sure_pos = []
        sure_resp = []
        crdm_msg = ""

        #stimuli positions and respective responses
        #left/right screen locations
        pos = [[-0.5, 0], [0.5, 0]]
        #1 = left, 2 = right
        resp = ["1", "2"]

        crdm_task_nonresp_ct = 0
        crdm_conf_nonresp_ct = 0
      Begin JS Experiment:
        delta_time = 0;
        sure_pos = [];
        sure_resp = [];
        crdm_msg = "";

        pos = [[(- 0.5), 0], [0.5, 0]];
        resp = ["1", "2"];

        crdm_task_nonresp_ct = 0;
        crdm_conf_nonresp_ct = 0;
      Begin JS Routine:
        my_loop = eval(loop_name);
        stop_timer = null;
        stopped_time = 0;
        lott_outcome = 0;
        conf_key = [];

        idx = random.randint(0, 1);
        sure_pos = pos[idx];
        sure_resp = resp[idx];
        sure_amt = 5;

        if ((idx === 0)) {
            lott_pos = pos[1];
        } else {
            lott_pos = pos[0];
        }
      Begin Routine:
        #variable for saving data
        my_loop = eval(loop_name)
        stop_timer = None
        stopped_time = 0
        lott_outcome = 0
        conf_key = []

        #random index for certain outcome position and response
        idx = random.randint(0,1)
        sure_pos = pos[idx]
        sure_resp = resp[idx]
        sure_amt = 5

        #certain outcome screen position is left/right, lottery is opposite
        if idx == 0:
            lott_pos = pos[1]
        else:
            lott_pos = pos[0]
      Each Frame:
        #Ss responded
        if len(crdm_trial_resp.keys) == 1:
            if stop_timer == None:
                stop_timer = core.Clock()
            else:
                if stop_timer.getTime() >= 0.5:
                    continueRoutine = False
      Each JS Frame:
        if (!(crdm_trial_resp.keys === undefined) && (crdm_trial_resp.keys.length === 1)) {
            if ((stop_timer === null)) {
                stop_timer = new util.Clock();
            } else {
                if ((stop_timer.getTime() >= 0.5)) {
                    continueRoutine = false;
                }
            }
        }
      End JS Routine:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        key = crdm_trial_resp.keys;
        sure_key = crdm_trial_resp.corr;
        my_loop.addData("crdm_trial_type", "task");
        if (_pj.in_es6(key, ["1", "2"])) {
            crdm_task_resps.push(key);
        }
        if ((((crdm_trial_resp.rt) === undefined) || (crdm_trial_resp.rt >= (2.2 - 0.5)))) {
            delta_time = 0;
        } else {
            delta_time = Math.max(0, (2 - (crdm_trial_resp.rt + stopped_time)));
        }
        if (!(crdm_trial_resp.keys === undefined) && (crdm_trial_resp.keys.length === 1)) {
            if ((sure_key === 1)) {
                if ((crdm_catch_trial === 1)) {
                    catch_trials.push(1);
                }
                crdm_trials.push(["CRDM", "sure", 5, crdm_img, crdm_lott_top, crdm_lott_bot, (- 1), crdm_win_side, crdm_domain]);
                my_loop.addData("crdm_choice", 0);
                my_loop.addData("crdm_choice2", "sure");
                my_loop.addData("crdm_lott", "");
                my_loop.addData("crdm_lott2", "");
            } else {
                if ((crdm_catch_trial === 1)) {
                    catch_trials.push(0);
                }
                lott_outcome = random.choices([0, 1], [100 - Number.parseInt(crdm_lott_p), Number.parseInt(crdm_lott_p)]);
                my_loop.addData("crdm_choice", 1);
                my_loop.addData("crdm_choice2", "lott");
                my_loop.addData("crdm_lott", lott_outcome);
                if ((lott_outcome === 1)) {
                    my_loop.addData("crdm_lott2", "win");
                    if ((Number.parseInt(crdm_lott_top) !== 0)) {
                        crdm_trials.push(["CRDM", "lott", crdm_lott_top, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_win_side, crdm_domain]);
                    } else {
                        crdm_trials.push(["CRDM", "lott", crdm_lott_bot, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_win_side, crdm_domain]);
                    }
                } else {
                    my_loop.addData("crdm_lott2", "lose");
                    crdm_trials.push(["CRDM", "lott", 0, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_win_side, crdm_domain]);
                }
            }
        }
      End Routine:
        #variable for feedback routine
        key = crdm_trial_resp.keys
        #1 if certain $ selected
        sure_key = crdm_trial_resp.corr
        my_loop.addData("crdm_trial_type", "task")
        if key in ["1", "2"]:
            crdm_task_resps.append(key)

        #delta time is leftover time excluding rt
        if type(crdm_trial_resp.rt) is list or crdm_trial_resp.rt >= 2 - 0.5:
            delta_time = 0
        else:
            delta_time = max(0, 2 - (crdm_trial_resp.rt + stopped_time))

        #pseudo-random chip draw using bag probabilities and store/record outcome
        #response received
        if len(key) == 1:
            #certain option
            if sure_key == 1:
                if crdm_catch_trial == 1:
                    catch_trials.append(1)
                #-1 is placeholder for lott_outcome
                crdm_trials.append(("CRDM", "sure", 5, crdm_img, crdm_lott_top, crdm_lott_bot, -1, crdm_win_side, crdm_domain))
                my_loop.addData("crdm_choice", 0)
                my_loop.addData("crdm_choice2", "sure")
                my_loop.addData("crdm_lott", "")
                my_loop.addData("crdm_lott2", "")
            #lottery option
            else:
                if crdm_catch_trial == 1:
                    catch_trials.append(0)
                #probability from bag parameters
                lott_outcome = random.choices([0,1], weights=[100-int(crdm_lott_p), int(crdm_lott_p)])[0]
                #record Ss choice
                my_loop.addData("crdm_choice", 1)
                my_loop.addData("crdm_choice2", "lott")
                #record lottery outcome
                my_loop.addData("crdm_lott", lott_outcome)
                #win
                if lott_outcome == 1:
                    my_loop.addData("crdm_lott2", "win")
                    #check which side was worth money
                    if int(crdm_lott_top) != 0:
                        #top side is winner
                        crdm_trials.append(("CRDM", "lott", crdm_lott_top, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_win_side, crdm_domain))
                    else:
                        #bottom side is winner
                        crdm_trials.append(("CRDM", "lott", crdm_lott_bot, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_win_side, crdm_domain))
                #lose
                else:
                    #losing lottery
                    my_loop.addData("crdm_lott2", "lose")
                    crdm_trials.append(("CRDM", "lott", 0, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_win_side, crdm_domain))
    ImageComponent crdm_trial_img
      image [set every repeat] = $"crdm/" + crdm_img
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent crdm_trial_lott_top
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $str("$"+str(format(crdm_lott_top)))
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    TextComponent crdm_trial_lott_bot
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $str("$"+str(format(crdm_lott_bot)))
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    TextComponent crdm_trial_sure_amt
      letterHeight = 0.06
      pos [set every repeat] = crdm_sure_pos
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $str("$"+str(format(crdm_sure_amt)))
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    PolygonComponent GRFX_fix
      fillColor = [0,0,0]
      lineColor = [0,0,0]
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 2
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    PolygonComponent crdm_trial_cue
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, 1.0000, -1.0000
      shape = circle
      size = (0.04, 0.04)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 2
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    KeyboardComponent crdm_trial_resp
      allowedKeys = '1', '2'
      correctAns = $crdm_sure_resp
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine crdm_end
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    CodeComponent crdm_end_code
      Code Type = Auto->JS
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      Begin Experiment:
        crdm_task_end_text = ""
        crdm_space_text = ""
      Begin Routine:
        crdm_unique_resps = []
        crdm_unique_count = 0
        for i in crdm_task_resps:
            if i not in crdm_unique_resps:
                crdm_unique_count += 1
                crdm_unique_resps.append(i)

        crdm_task_end_text = ""
        crdm_space_text = ""
        #filter for nonresponses
        if len(crdm_task_resps) < 68 or len(crdm_conf_resps) < 68: #95% of 72 CRDM trials
            if len(crdm_task_resps) < 68:
                crdm_task_end_text = "You failed to respond to " + str(72-len(crdm_task_resps)) + " task trials and did not meet the 95% response rate requirement. \n \n The Risk & Ambiguity Task will now close."
            if len(crdm_conf_resps) < 68:
                crdm_task_end_text = "You failed to respond to both parts of " + str(72-len(crdm_conf_resps)) + " trials and did not meet the 95% response rate requirement. \n \n The Risk & Ambiguity Task will now close."
            crdm_space_text = "Press SPACE to end."
            exp_proceed = False
            my_loop.addData("crdm_subReject1", "< 95% resp rate")
            my_loop.addData("crdm_subReject1_nonresps-task", 72-len(crdm_task_resps))
            my_loop.addData("crdm_subReject1_nonresps-conf", 72-len(crdm_conf_resps))
        #filter for single-button responses
        elif crdm_unique_count < 2: #same for each exp
            crdm_task_end_text = "You provided the same response to all " + str(len(crdm_task_resps)) + " trials. \n \n You did not follow task instructions. \n \n The Risk & Ambiguity Task will now close."
            crdm_space_text = "Press SPACE to end."
            exp_proceed = False
            my_loop.addData("crdm_subReject2", "1key response")
            my_loop.addData("crdm_subReject2_key", crdm_task_resps[0])
        #filter for poor performance on CRDM catch trials (10/20 catch trials -- 0.097% of random success on 10 trials)
        #elif sum(crdm_catch_trials) < 10:
            #crdm_task_end_text = "Your performance on the previous trial block demonstrates you did not follow task instructions. \n \n The Risk & Ambiguity Task will now close."
            #crdm_space_text = "Press SPACE to end."
            #exp_proceed = False
            #my_loop.addData("crdm_subReject3", "catch fail")
            #my_loop.addData("crdm_subReject3_fails", 20-sum(crdm_catch_trials))
        #all CRDM task trial criterion are met
        else:
            crdm_task_end_text = "You have completed the Risk & Ambiguity Task!"
            crdm_space_text = "Press SPACE to continue."
    TextComponent crdm_end_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Risk & Ambiguity Task *
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    TextComponent crdm_end_txt_ON
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $crdm_task_end_text
      wrapWidth = 1.35
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    TextComponent crdm_end_space_ON
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $crdm_space_text
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    TextComponent crdm_end_txt_OFF
      disabled = True
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = You have completed the Risk & Ambiguity Task!
      wrapWidth = 1.35
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    TextComponent crdm_end_space_OFF
      disabled = True
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_end_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cpdm_pract_iti1
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    CodeComponent cpdm_pract_iti1_code
      Code Type = JS
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      Begin JS Routine:
        if (!(cpdm_pract_trials1.thisTrialN == undefined) && (cpdm_pract_trials1.thisTrialN === 4)) {
            continueRoutine = false;
        }
    PolygonComponent cpdm_pract_iti1_poly
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine cpdm_trial_iti1
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    CodeComponent cpdm_trials_iti1_code
      Code Type = JS
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      Begin JS Routine:
        cpdm_iti_time = (cpdm_iti_list[my_loop.thisIndex] + cpdm_delta_time);
        if (!(cpdm_trials1.thisTrialN == undefined) && (cpdm_trials1.thisTrialN === 199)) {
            continueRoutine = false;
        }
      End JS Routine:
        my_loop.addData("cpdm_delta_time", cpdm_delta_time);
        my_loop.addData("cpdm_iti_time", cpdm_iti_time);
    PolygonComponent cpdm_trials_iti1_poly
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $cpdm_iti_time
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  Routine crdm_trials_iti1
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    CodeComponent crdm_trials_iti1_code
      Code Type = JS
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      Begin JS Routine:
        crdm_iti_time = (crdm_iti_list[my_loop.thisIndex] + crdm_delta_time);
        if (!(crdm_trials1.thisTrialN == undefined) && (crdm_trials1.thisTrialN === 71)) {
            continueRoutine = false;
        }
      End JS Routine:
        my_loop.addData("crdm_delta_time", crdm_delta_time);
        my_loop.addData("crdm_iti_time", crdm_iti_time);
    PolygonComponent crdm_trials_iti1_poly
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $crdm_iti_time
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  Routine cpdm_pract_iti2
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    CodeComponent cpdm_pract_iti2_code
      Code Type = JS
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      Begin JS Routine:
        if (!(cpdm_pract_trials2.thisTrialN == undefined) && (cpdm_pract_trials2.thisTrialN === 4)) {
            continueRoutine = false;
        }
    PolygonComponent cpdm_pract_iti_poly_2
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine cpdm_trials_iti2
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    CodeComponent cpdm_trials_iti2_code
      Code Type = JS
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      Begin JS Routine:
        cpdm_iti_time = (cpdm_iti_list[my_loop.thisIndex] + cpdm_delta_time);
        if (!(cpdm_trials2.thisTrialN == undefined) && (cpdm_trials2.thisTrialN === 199)) {
            continueRoutine = false;
        }
      End JS Routine:
        my_loop.addData("cpdm_delta_time", cpdm_delta_time);
        my_loop.addData("cpdm_iti_time", cpdm_iti_time);
    PolygonComponent cpdm_trials_iti2_poly
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $cpdm_iti_time
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  Routine cpdm_pract_iti3
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    CodeComponent cpdm_pract_iti3_code
      Code Type = Both
      Begin JS Routine:
        if (!(cpdm_pract_trials3.thisTrialN == undefined) && (cpdm_pract_trials3.thisTrialN === 4)) {
            continueRoutine = false;
        }
      Begin Routine:
        #3 CPDM practice trials
        if cpdm_pract_trials3.thisTrialN == 4:
            continueRoutine = False
    PolygonComponent cpdm_pract_iti3_poly
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine cpdm_trials_iti3
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    CodeComponent cpdm_trials_iti3_code
      Code Type = Both
      Begin JS Routine:
        iti_time = (iti_list[my_loop.thisIndex] + delta_time);
        if (!(cpdm_trials3.thisTrialN == undefined) && (cpdm_trials3.thisTrialN === 199)) {
            continueRoutine = false;
        }
      Begin Routine:
        #variable ITI for non-practice trials
        iti_time = iti_list[my_loop.thisIndex] + delta_time
        #200 CPDM trials per run
        if cpdm_trials3.thisTrialN == 199:
            continueRoutine = False
      End JS Routine:
        my_loop.addData("cpdm_delta_time", delta_time);
        my_loop.addData("cpdm_iti_time", iti_time);
      End Routine:
        #record delta time
        my_loop.addData("cpdm_delta_time", delta_time)
        #record iti time
        my_loop.addData("cpdm_iti_time", iti_time)
    PolygonComponent cpdm_trials_iti3_poly
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $cpdm_iti_time
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  Routine crdm_trials_iti2
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    CodeComponent crdm_trials_iti2_code
      Code Type = JS
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      Begin JS Routine:
        crdm_iti_time = (crdm_iti_list[my_loop.thisIndex] + crdm_delta_time);
        if (!(crdm_trials2.thisTrialN == undefined) && (crdm_trials2.thisTrialN === 71)) {
            continueRoutine = false;
        }
      End JS Routine:
        my_loop.addData("crdm_delta_time", crdm_delta_time);
        my_loop.addData("crdm_iti_time", crdm_iti_time);
    PolygonComponent crdm_trials_iti2_poly
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $crdm_iti_time
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  Routine cdd_feedback
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    CodeComponent cdd_feedback_code
      Code Type = JS
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      Begin JS Routine:
        if ((cdd_key === undefined)) {
            cdd_msg = "NO RESPONSE";
        } else {
            if (cdd_immed_key) {
                cdd_msg = "$ NOW";
            } else {
                cdd_msg = "$ LATER";
            }
        }
    TextComponent cdd_feedback_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $cdd_msg
      wrapWidth = 1.25
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  Routine cdd_conf
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    CodeComponent cdd_conf_code
      Code Type = JS
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      Begin JS Routine:
        if ((cdd_key === undefined)) {
            continueRoutine = false;
        }
        conf1_color = [0, 0, 0];
        conf2_color = [0, 0, 0];
        conf3_color = [0, 0, 0];
        conf4_color = [0, 0, 0];
      Each JS Frame:
        cdd_conf_key = cdd_conf_resp.keys;
        if (!(cdd_conf_key === undefined) && (cdd_conf_key.length === 1)) {
            if ((cdd_conf_key === "1")) {
                conf1_color = "darkgray";
                conf2_color = [0, 0, 0];
                conf3_color = [0, 0, 0];
                conf4_color = [0, 0, 0];
            } else {
                if ((cdd_conf_key === "2")) {
                    conf1_color = [0, 0, 0];
                    conf2_color = "darkgray";
                    conf3_color = [0, 0, 0];
                    conf4_color = [0, 0, 0];
                } else {
                    if ((cdd_conf_key === "3")) {
                        conf1_color = [0, 0, 0];
                        conf2_color = [0, 0, 0];
                        conf3_color = "darkgray";
                        conf4_color = [0, 0, 0];
                    } else {
                        if ((cdd_conf_key === "4")) {
                            conf1_color = [0, 0, 0];
                            conf2_color = [0, 0, 0];
                            conf3_color = [0, 0, 0];
                            conf4_color = "darkgray";
                        }
                    }
                }
            }
        }
      End JS Routine:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        my_loop.addData("cdd_conf", cdd_conf_key);
        if (!(cdd_conf_key == undefined) && (cdd_conf_key.length === 1)) {
            if ((Array.isArray(cdd_conf_key))) {
                if (_pj.in_es6(cdd_conf_key.slice((- 1))[0], ["1", "2", "3", "4"])) {
                    cdd_conf_resps.push(cdd_conf_key);
                }
            } else {
                if (_pj.in_es6(cdd_conf_key, ["1", "2", "3", "4"])) {
                    cdd_conf_resps.push(cdd_conf_key);
                }
            }
        }
        conf1_color = [0, 0, 0];
        conf2_color = [0, 0, 0];
        conf3_color = [0, 0, 0];
        conf4_color = [0, 0, 0];

        cdd_conf1.setFillColor(new util.Color(conf1_color), false);
        cdd_conf2.setFillColor(new util.Color(conf2_color), false);
        cdd_conf3.setFillColor(new util.Color(conf3_color), false);
        cdd_conf4.setFillColor(new util.Color(conf4_color), false);
    TextComponent cdd_conf_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = How confident are you in your choice?
      wrapWidth = 1.25
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    PolygonComponent cdd_conf1
      fillColor [set every frame] = $conf1_color
      lineWidth = 10
      pos = (-0.6, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent cdd_conf1_txt
      letterHeight = 0.04
      pos = (-0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Not at all
        confident

        1
    PolygonComponent cdd_conf2
      fillColor [set every frame] = $conf2_color
      lineWidth = 10
      pos = (-0.2, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent cdd_conf2_txt
      letterHeight = 0.04
      pos = (-0.2, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Less
        confident

        2
    PolygonComponent cdd_conf3
      fillColor [set every frame] = $conf3_color
      lineWidth = 10
      pos = (0.2, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent cdd_conf3_txt
      letterHeight = 0.04
      pos = (0.2, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Somewhat
        confident

        3
    PolygonComponent cdd_conf4
      fillColor [set every frame] = $conf4_color
      lineWidth = 10
      pos = (0.6, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent cdd_conf4_txt
      letterHeight = 0.04
      pos = (0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Very
        confident

        4
    KeyboardComponent cdd_conf_resp
      allowedKeys = '1', '2', '3', '4'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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
  Routine cdd_trial_instr
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    CodeComponent cdd_trial_instr_code
      Code Type = JS
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      Begin JS Routine:
        cdd_task_resps = [];
        cdd_conf_resps = [];
        cdd_catch_trials = [];
        cdd_iti_list = function () {
            var _pj_a = [], _pj_b = util.range(100);
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var i = _pj_b[_pj_c];
                _pj_a.push(random.random());
            }
            return _pj_a;
        }
        .call(this);
        cdd_s = util.sum(cdd_iti_list);
        cdd_iti_list = function () {
            var _pj_a = [], _pj_b = cdd_iti_list;
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var i = _pj_b[_pj_c];
                _pj_a.push(((i * 100) / cdd_s));
            }
            return _pj_a;
        }
        .call(this);
    TextComponent cdd_trial_instr_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Delay Discounting Task *
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    TextComponent cdd_trial_instr_txt
      letterHeight = 0.03
      pos = (0, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        Now that you have practiced, the actual task will begin.

        Remember to make your choice between the immediate and delayed amounts when you see the green circle. You will have 3 seconds to consider both options and 2 seconds to make your choice. After each choice, you will be given 2 seconds to rate your choice confidence.

        When a white cross appears, please focus your attention on the center of the screen.
    TextComponent cdd_trial_instr_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent cdd_trial_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cdd_trial
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    CodeComponent cdd_trial_JS
      Code Type = JS
      Begin JS Experiment:
        cdd_delta_time = 0;
        cdd_immed_pos = [];
        cdd_delay_pos = [];
        cdd_immed_resp = [];
        cdd_msg = "";
        cdd_pos = [[(- 0.5), 0], [0.5, 0]];
        cdd_resp = ["1", "2"];

        cdd_task_nonresp_ct = 0;
        cdd_conf_nonresp_ct = 0;
      Begin JS Routine:
        my_loop = eval(cdd_loop_name);
        cdd_stop_timer = null;
        cdd_stopped_time = 0;
        cdd_conf_key = [];
        cdd_idx = random.randint(0, 2); //Math.round(Math.random() * (1- 0) + 0);
        cdd_immed_pos = cdd_pos[cdd_idx];
        cdd_immed_resp = cdd_resp[cdd_idx];

        if ((cdd_idx === 0)) {
            cdd_delay_pos = cdd_pos[1];
        } else {
            cdd_delay_pos = cdd_pos[0];
        }

        cdd_immed_amt = cdd_trials_dict["cdd_immed_amt"][cdd_trial_idx];
        cdd_immed_wait = 0;
        cdd_delay_amt = cdd_trials_dict["cdd_delay_amt"][cdd_trial_idx];
        cdd_delay_wait = cdd_trials_dict["cdd_delay_wait"][cdd_trial_idx];
        cdd_deltaSV = cdd_trials_dict["deltaSV"][cdd_trial_idx];
        cdd_delaySV = cdd_trials_dict["delay_SV"][cdd_trial_idx];
        cdd_immedSV = cdd_trials_dict["immed_SV"][cdd_trial_idx];
      Each JS Frame:
        if (!(cdd_trial_resp.keys === undefined) && (cdd_trial_resp.keys.length === 1)) {
            if ((cdd_stop_timer === null)) {
                cdd_stop_timer = new util.Clock();
            } else {
                cdd_stopped_time = cdd_stop_timer.getTime();
                if ((cdd_stopped_time >= 0.5)) {
                    continueRoutine = false;
                }
            }
        }
      End JS Routine:
        cdd_q.update(cdd_contrast_idx, cdd_response);
        cdd_contrast_idx = cdd_q.next_contrast(); // # find the next contrast index

        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        cdd_key = cdd_trial_resp.keys;
        cdd_immed_key = cdd_trial_resp.corr;
        if (_pj.in_es6(cdd_key, ["1", "2"])) {
            cdd_task_resps.push(cdd_key);
        }
        if ((((cdd_trial_resp.rt) === undefined) || (cdd_trial_resp.rt >= (2.2 - 0.5)))) {
            cdd_delta_time = 0;
        } else {
            cdd_delta_time = Math.max(0, (2 - (cdd_trial_resp.rt + cdd_stopped_time)));
        }
        if (!(cdd_key === undefined) && (cdd_key.length === 1)) {
            if ((cdd_immed_key === 1)) {
                //if ((cdd_catch_trial === 1)) {
                    //cdd_catch_trials.push(1);
                //}
                my_loop.addData("cdd_choice", 0);
                my_loop.addData("cdd_choice2", "immed");
                cdd_bonus_trials.push(["CDD", "immed", cdd_immed_amt, cdd_immed_wait, cdd_delay_amt, cdd_delay_wait]);
            } else {
                //if ((cdd_catch_trial === 1)) {
                    //cdd_catch_trials.push(0);
                //}
                my_loop.addData("cdd_choice", 1);
                my_loop.addData("cdd_choice2", "delay");
                cdd_bonus_trials.push(["CDD", "delay", cdd_immed_amt, cdd_immed_wait, cdd_delay_amt, cdd_delay_wait]);
            }
        }

        my_loop.addData("cdd_trial_type", "task");
        my_loop.addData("cdd_immed_amt", cdd_immed_amt);
        my_loop.addData("cdd_delay_amt", cdd_delay_amt);
        my_loop.addData("cdd_delay_wait", cdd_delay_wait);
        my_loop.addData("cdd_delta_SV", cdd_deltaSV); //delay - immed
        my_loop.addData("cdd_delay_SV", cdd_delaySV); //SV of delay option
        my_loop.addData("cdd_immed_SV", cdd_immedSV); //SV of immediate option (same as value if alpha = 1)
    CodeComponent cdd_trial_code
      Code Type = Both
      disabled = True
      Begin Experiment:
        delta_time = 0

        #position of immediate reward option
        immed_pos = []
        #button for immediate reward option
        immed_resp = []
        cdd_msg = ""

        #left/right screen positions
        pos = [[-0.5, 0], [0.5, 0]]
        #left/right response mapping
        resp = ['1', '2']

        cdd_task_nonresp_ct = 0
        cdd_conf_nonresp_ct = 0
      Begin JS Experiment:
        delta_time = 0;
        immed_pos = [];
        immed_resp = [];
        cdd_msg = "";
        pos = [[(- 0.5), 0], [0.5, 0]];
        resp = ["1", "2"];

        cdd_task_nonresp_ct = 0;
        cdd_conf_nonresp_ct = 0;
      Begin JS Routine:
        my_loop = eval(loop_name);
        stop_timer = null;
        stopped_time = 0;
        conf_key = [];
        idx = random.randint(0, 1);
        immed_pos = pos[idx];
        immed_resp = resp[idx];
        if ((idx === 0)) {
            delay_pos = pos[1];
        } else {
            delay_pos = pos[0];
        }
      Begin Routine:
        my_loop = eval(loop_name)
        stop_timer = None
        stopped_time = 0
        conf_key = []

        #random integer to determine side of immediate option
        idx = random.randint(0,1)
        immed_pos = pos[idx]
        immed_resp = resp[idx]

        #immed position is left, delay is right
        if idx == 0:
            delay_pos = pos[1]
        else:
            delay_pos = pos[0]
      Each Frame:
        #Ss responded
        if len(cdd_trial_resp.keys) == 1:
            if stop_timer == None:
                stop_timer = core.Clock()
            else:
                stopped_time = stop_timer.getTime()
                if stopped_time >= 0.5:
                    continueRoutine = False
      Each JS Frame:
        if (!(cdd_trial_resp.keys === undefined) && (cdd_trial_resp.keys.length === 1)) {
            if ((stop_timer === null)) {
                stop_timer = new util.Clock();
            } else {
                stopped_time = stop_timer.getTime();
                if ((stopped_time >= 0.5)) {
                    continueRoutine = false;
                }
            }
        }
      End JS Routine:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        key = cdd_trial_resp.keys;
        immed_key = cdd_trial_resp.corr;
        my_loop.addData("cdd_trial_type", "task");
        if (_pj.in_es6(key, ["1", "2"])) {
            cdd_task_resps.push(key);
        }
        if ((((cdd_trial_resp.rt) === undefined) || (cdd_trial_resp.rt >= (2.2 - 0.5)))) {
            delta_time = 0;
        } else {
            delta_time = Math.max(0, (2 - (cdd_trial_resp.rt + stopped_time)));
        }
        if (!(key === undefined) && (key.length === 1)) {
            if ((immed_key === 1)) {
                if ((cdd_catch_trial === 1)) {
                    catch_trials.push(1);
                }
                my_loop.addData("cdd_choice", 0);
                my_loop.addData("cdd_choice2", "immed");
                cdd_trials.push(["CDD", "immed", cdd_immed_amt, cdd_immed_wait, cdd_delay_amt, cdd_delay_wait]);
            } else {
                if ((cdd_catch_trial === 1)) {
                    catch_trials.push(0);
                }
                my_loop.addData("cdd_choice", 1);
                my_loop.addData("cdd_choice2", "delay");
                cdd_trials.push(["CDD", "delay", cdd_immed_amt, cdd_immed_wait, cdd_delay_amt, cdd_delay_wait]);
            }
        }
      End Routine:
        key = cdd_trial_resp.keys
        #1 if immed option chosen
        immed_key = cdd_trial_resp.corr
        my_loop.addData("cdd_trial_type", "task")
        if key in ["1", "2"]:
            cdd_task_resps.append(key)

        if type(cdd_trial_resp.rt) is list or cdd_trial_resp.rt >= 2 - 0.5:
            delta_time = 0
        #Ss responded and not near end of resp window
        else:
            delta_time = max(0, 2 - (cdd_trial_resp.rt + stopped_time))

        #record info to cdd_trials variable
        #response trial
        if len(key) == 1:
            #Ss chose immed
            if immed_key == 1:
                if cdd_catch_trial == 1:
                    catch_trials.append(1)
                my_loop.addData("cdd_choice", 0)
                my_loop.addData("cdd_choice2", "immed")
                cdd_trials.append(("CDD", "immed", cdd_immed_amt, cdd_immed_wait, cdd_delay_amt, cdd_delay_wait))
            #Ss chose delay
            else:
                if cdd_catch_trial == 1:
                    catch_trials.append(0)
                my_loop.addData("cdd_choice", 1)
                my_loop.addData("cdd_choice2", "delay")
                cdd_trials.append(("CDD", "delay", cdd_immed_amt, cdd_immed_wait, cdd_delay_amt, cdd_delay_wait))
    PolygonComponent cdd_trial_left_poly
      fillColor = 0,0,0
      lineWidth = 10
      pos = (-0.5, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent cdd_trial_right_poly
      fillColor = 0,0,0
      lineWidth = 10
      pos = (0.5, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent cdd_trial_prompt_txt
      letterHeight = 0.06
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Which would you prefer?
      wrapWidth = 1.25
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    TextComponent cdd_trial_immed_txt
      letterHeight = 0.04
      pos [set every repeat] = cdd_immed_pos
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $str("$"+str(format(cdd_immed_amt))) + "\n" + "\n" + " TODAY"
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    TextComponent cdd_trial_or_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = OR
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    TextComponent cdd_trial_delay_txt
      letterHeight = 0.04
      pos [set every repeat] = cdd_delay_pos
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $str("$"+str(format(cdd_delay_amt))) + "\n" + "\n" + str(cdd_delay_wait) + " DAYS"
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    PolygonComponent cdd_trial_cue
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, 1.0000, -1.0000
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 2
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    KeyboardComponent cdd_trial_resp
      allowedKeys = '1', '2'
      correctAns = $cdd_immed_resp
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine cdd_trial_iti1
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    CodeComponent cdd_trial_iti1_code
      Code Type = JS
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      Begin JS Routine:
        cdd_iti_time = (cdd_iti_list[my_loop.thisIndex] + cdd_delta_time);
        if (!(cdd_trials1.thisTrialN == undefined) && (cdd_trials1.thisTrialN === 99)) {
            continueRoutine = false;
        }
      End JS Routine:
        my_loop.addData("cdd_delta_time", cdd_delta_time);
        my_loop.addData("cdd_iti_time", cdd_iti_time);
    PolygonComponent cdd_trial_iti1_poly
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 1.0000, 1.0000, 1.0000
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $cdd_iti_time
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  Routine cdd_end
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    CodeComponent cdd_end_code
      Code Type = Auto->JS
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      Begin Experiment:
        cdd_task_end_text = ""
        cdd_space_text = ""
      Begin Routine:
        cdd_unique_resps = []
        cdd_unique_count = 0
        for i in cdd_task_resps:
            if i not in cdd_unique_resps:
                cdd_unique_count += 1
                cdd_unique_resps.append(i)

        cdd_task_end_text = ""
        cdd_space_text = ""
        #filter for nonresponses
        if len(cdd_task_resps) < 95 or len(cdd_conf_resps) < 95: #95% of 100 CDD trials
            if len(cdd_task_resps) < 95:
                cdd_task_end_text = "You failed to respond to " + str(100-len(cdd_task_resps)) + " task trials and did not meet the 95% response rate requirement. \n \n The IDM Study will now close and you will not be eligible to receive payment or a bonus."
            if len(cdd_conf_resps) < 95:
                cdd_task_end_text = "You failed to respond to both parts of " + str(100-len(cdd_conf_resps)) + " trials and did not meet the 95% response rate requirement. \n \n The IDM Study will now close and you will not be eligible to receive payment or a bonus."
            cdd_space_text = "Press SPACE to end."
            my_loop.addData("cdd_subReject1", "< 95% resp rate")
            my_loop.addData("cdd_subReject1_nonresps-task", 100-len(cdd_task_resps))
            my_loop.addData("cdd_subReject1_nonresps-conf", 100-len(cdd_conf_resps))
            exp_proceed = False
        #filter for single-button responses
        elif cdd_unique_count < 2: #same for each exp
            cdd_task_end_text = "You provided the same response to all " + str(len(cdd_task_resps)) + " trials. \n \n You did not follow task instructions. \n \n The IDM Study will now close and you will not be eligible to receive payment or a bonus."
            cdd_space_text = "Press SPACE to end."
            exp_proceed = False
            my_loop.addData("cdd_subReject2", "1key response")
            my_loop.addData("cdd_subReject2_key", cdd_task_resps[0])
        #filter for poor performance on CDD catch trials (5/6 catch trials -- 3.125% of random success on 5 trials)
        #elif sum(cdd_catch_trials) < 5:
        #    cdd_task_end_text = "Your performance on the previous trial block demonstrates you did not follow task instructions. \n \n The IDM Study will now close and you will not be eligible to receive payment or a bonus."
        #    cdd_space_text = "Press SPACE to end."
        #    exp_proceed = False
        #    my_loop.addData("cdd_subReject3", "catch fail")
        #    my_loop.addData("cdd_subReject3_fails", 6-sum(cdd_catch_trials))
        #all CDD task trial criterion are met
        else:
            cdd_task_end_text = "You have completed the Delay Discounting Task!"
            cdd_space_text = "Press SPACE to continue."
    TextComponent cdd_end_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Delay Discounting Task *
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    TextComponent cdd_end_txt_ON
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $cdd_task_end_text
      wrapWidth = 1.35
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    TextComponent cdd_end_space_ON
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $cdd_space_text
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    TextComponent cdd_end_txt_OFF
      disabled = True
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = You have completed the Delay Discounting Task!
      wrapWidth = 1.35
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    TextComponent cdd_end_space_OFF
      disabled = True
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent cdd_end_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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
  Routine cdd_trial_iti2
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    CodeComponent cdd_trial_iti2_code
      Code Type = JS
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      Begin JS Routine:
        cdd_iti_time = (cdd_iti_list[my_loop.thisIndex] + cdd_delta_time);
        if (!(cdd_trials2.thisTrialN == undefined) && (cdd_trials2.thisTrialN === 99)) {
            continueRoutine = false;
        }
      End JS Routine:
        my_loop.addData("cdd_delta_time", cdd_delta_time);
        my_loop.addData("cdd_iti_time", cdd_iti_time);
    PolygonComponent cdd_trial_iti2_poly
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 1.0000, 1.0000, 1.0000
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $cdd_iti_time
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  Routine cdd_bonus
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    CodeComponent cdd_bonus_code
      Code Type = JS
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      Begin JS Routine:
        if ((random_exp === "cdd")) {
            continueRoutine = true;
        } else {
            continueRoutine = false;
        }
        exp = [];
        choice = [];
        choice_amt = [];
        choice_wait = [];
        other_amt = [];
        other_wait = [];
        choice_text = "";
        other_text = "";
        idx = Number.parseInt((random.random() * cdd_bonus_trials.length));
        if ((cdd_bonus_trials[idx][1] === "immed")) {
            [exp, choice, choice_amt, choice_wait, other_amt, other_wait] = cdd_bonus_trials[idx];
            if ((random_exp === "cdd")) {
                my_loop.addData("cdd_bonus_choice", choice);
                my_loop.addData("cdd_bonus_amt", choice_amt);
                my_loop.addData("cdd_bonus_delay", choice_wait);
            }
            choice_amt = format(choice_amt);
            other_amt = format(other_amt);
            choice_text = (("$" + choice_amt.toString()) + " TODAY");
            other_text = (((("$" + other_amt.toString()) + " in ") + other_wait.toString()) + " DAYS");

        } else {
            [exp, choice, other_amt, other_wait, choice_amt, choice_wait] = cdd_bonus_trials[idx];
            if ((random_exp === "cdd")) {
                my_loop.addData("cdd_bonus_choice", choice);
                my_loop.addData("cdd_bonus_amt", choice_amt);
                my_loop.addData("cdd_bonus_delay", choice_wait);
            }
            choice_amt = format(choice_amt);
            other_amt = format(other_amt);
            choice_text = (((("$" + choice_amt.toString()) + " in ") + choice_wait.toString()) + " DAYS");
            other_text = (("$" + other_amt.toString()) + " TODAY");
        }
    TextComponent cdd_bonus_thanks_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.35
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      text:
        Your randomly selected *bonus earnings trial* is from the
        Delay Discounting Task!
    TextComponent cdd_bonus_box
      letterHeight = 0.04
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = In this trial, you chose to receive:
      wrapWidth = 1.25
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    TextComponent cdd_bonus_choice_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $choice_text
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    TextComponent cdd_bonus_rather_txt
      letterHeight = 0.04
      pos = (0, -0.125)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = rather than
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    TextComponent cdd_bonus_other_txt
      color = 0.9608, 0.0039, -0.1059
      letterHeight = 0.055
      pos = (0, -0.225)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $other_text
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    TextComponent cdd_bonus_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to receive your *COMPLETION CODE*
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    KeyboardComponent cdd_bonus_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cpdm_run_break2
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    CodeComponent cpdm_run_break2_code
      Code Type = Auto->JS
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      Begin Experiment:
        cpdm_run_break_text = ""
        cpdm_space_text = ""
      Begin Routine:
        cpdm_unique_resps = []
        cpdm_unique_count = 0
        for i in run_resps:
            if i not in cpdm_unique_resps:
                cpdm_unique_count += 1
                cpdm_unique_resps.append(i)

        cpdm_run_break_text = ""
        cpdm_space_text = ""
        #filter for nonresponses
        if len(run_resps) < 190: #95% = 190 trials per block
            cpdm_run_break_text = "You failed to respond to " + str(200-len(run_resps)) + " trials and did not meet the 95% response rate requirement. \n \n The IDM Study will now close and you will not be eligible to receive payment or a bonus."
            cpdm_space_text = "Press SPACE to end."
            exp_proceed = False
            my_loop.addData("cpdm_subReject1", "< 95% resp rate")
            my_loop.addData("cpdm_subReject1_nonresps", 200-len(run_resps))
        #filter for single-button responses
        elif cpdm_unique_count < 2: #same for each exp
            cpdm_run_break_text = "You provided the same response to all " + str(len(run_resps)) + " trials. \n \n You did not follow task instructions. \n \n The IDM Study will now close and you will not be eligible to receive payment or a bonus."
            cpdm_space_text = "Press SPACE to end."
            exp_proceed = False
            my_loop.addData("cpdm_subReject2", "1key response")
            my_loop.addData("cpdm_subReject2_key", run_resps[0])
        #filter for poor performance on CPDM catch trials for low volatility blocks (14/20 catch trial criterion -- 5.77% of random success on 14/20 trials)
        elif "low_vol" in cpdm_run_dimension and sum(cpdm_catch_trials) < 14:
            cpdm_run_break_text = "Your performance on the previous trial block demonstrates you did not follow task instructions. \n \n The IDM Study will now close and you will not be eligible to receive payment or a bonus."
            cpdm_space_text = "Press SPACE to end."
            exp_proceed = False
            my_loop.addData("cpdm_subReject3LV", "LV catch fail")
            my_loop.addData("cpdm_subReject3LV_fails", 20-sum(cpdm_catch_trials))
        #filter for poor performance on CPDM catch trials for high volatility blocks (6/8 catch trial criterion -- 14.45% of random success on 7/8 trials)
        #elif "high_vol" in cpdm_run_dimension and sum(cpdm_catch_trials) < 6:
        #    cpdm_run_break_text = "Your performance on the previous trial block demonstrates you did not follow task instructions. \n \n The IDM Study will now close and you will not be eligible to receive payment or a bonus."
        #    cpdm_space_text = "Press SPACE to end."
        #    exp_proceed = False
        #    my_loop.addData("subReject3HV", "HV catch fail")
        #    my_loop.addData("subReject3HV_fails", 8-sum(cpdm_catch_trials))
        #all CPDM criterion are met -- good data
        else:
            #final run
            if condition_runs2.thisN == 1:
                cpdm_run_break_text = "You have completed the Visual Decision Making Task!"
                cpdm_space_text = "Press SPACE to continue."
            #first three runs
            else:
                cpdm_run_break_text = "Please feel free to take a short break. \n \n As you begin Block " + str(run_counter) + ", read the possible monetary values of each option carefully as they may have changed."
                cpdm_space_text = "Press SPACE to continue."
    TextComponent cpdm_run_break2_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Visual Decision Making Task *
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    TextComponent cpdm_run_break2_txt
      letterHeight [set every repeat] = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $cpdm_run_break_text
      wrapWidth = 1.35
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    TextComponent cpdm_run_break2_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $cpdm_space_text
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    TextComponent cpdm_run_break2_OFF
      disabled = True
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = You completed the thing!
      wrapWidth = 1.35
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    TextComponent cpdm_run_break2_space_OFF
      disabled = True
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = Press SPACE to continue.
      wrapWidth = 1.35
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    KeyboardComponent cpdm_run_break2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cpdm_run_break3
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    CodeComponent cpdm_run_break3_code
      Code Type = Auto->JS
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      Begin Experiment:
        cpdm_run_break_text = ""
        cpdm_space_text = ""
      Begin Routine:
        cpdm_unique_resps = []
        cpdm_unique_count = 0
        for i in run_resps:
            if i not in cpdm_unique_resps:
                cpdm_unique_count += 1
                cpdm_unique_resps.append(i)

        cpdm_run_break_text = ""
        cpdm_space_text = ""
        #filter for nonresponses
        if len(run_resps) < 190: #95% = 190 trials per block
            cpdm_run_break_text = "You failed to respond to " + str(200-len(run_resps)) + " trials and did not meet the 95% response rate requirement. \n \n The IDM Study will now close and you will not be eligible to receive payment or a bonus."
            cpdm_space_text = "Press SPACE to end."
            exp_proceed = False
            my_loop.addData("cpdm_subReject1", "< 95% resp rate")
            my_loop.addData("cpdm_subReject1_nonresps", 200-len(run_resps))
        #filter for single-button responses
        elif cpdm_unique_count < 2: #same for each exp
            cpdm_run_break_text = "You provided the same response to all " + str(len(run_resps)) + " trials. \n \n You did not follow task instructions. \n \n The IDM Study will now close and you will not be eligible to receive payment or a bonus."
            cpdm_space_text = "Press SPACE to end."
            exp_proceed = False
            my_loop.addData("cpdm_subReject2", "1key response")
            my_loop.addData("cpdm_subReject2_key", run_resps[0])
        #filter for poor performance on CPDM catch trials for low volatility blocks (14/20 catch trial criterion -- 5.77% of random success on 14/20 trials)
        elif "low_vol" in cpdm_run_dimension and sum(cpdm_catch_trials) < 14:
            cpdm_run_break_text = "Your performance on the previous trial block demonstrates you did not follow task instructions. \n \n The IDM Study will now close and you will not be eligible to receive payment or a bonus."
            cpdm_space_text = "Press SPACE to end."
            exp_proceed = False
            my_loop.addData("cpdm_subReject3LV", "LV catch fail")
            my_loop.addData("cpdm_subReject3LV_fails", 20-sum(cpdm_catch_trials))
        #filter for poor performance on CPDM catch trials for high volatility blocks (6/8 catch trial criterion -- 14.45% of random success on 7/8 trials)
        #elif "high_vol" in cpdm_run_dimension and sum(cpdm_catch_trials) < 6:
        #    cpdm_run_break_text = "Your performance on the previous trial block demonstrates you did not follow task instructions. \n \n The IDM Study will now close and you will not be eligible to receive payment or a bonus."
        #    cpdm_space_text = "Press SPACE to end."
        #    exp_proceed = False
        #    my_loop.addData("subReject3HV", "HV catch fail")
        #    my_loop.addData("subReject3HV_fails", 8-sum(cpdm_catch_trials))
        #all CPDM criterion are met -- good data
        else:
            #final run
            if condition_runs3.thisN == 1:
                cpdm_run_break_text = "You have completed the Visual Decision Making Task!"
                cpdm_space_text = "Press SPACE to continue."
            #first three runs
            else:
                cpdm_run_break_text = "Please feel free to take a short break. \n \n As you begin Block " + str(run_counter) + ", read the possible monetary values of each option carefully as they may have changed."
                cpdm_space_text = "Press SPACE to continue."
    TextComponent cpdm_run_break3_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Visual Decision Making Task *
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    TextComponent cpdm_run_break3_txt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $cpdm_run_break_text
      wrapWidth = 1.35
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    TextComponent cpdm_run_break3_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $cpdm_space_text
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    TextComponent cpdm_run_break3_OFF
      disabled = True
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = You completed the thing!
      wrapWidth = 1.35
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    TextComponent cpdm_run_break3_space_OFF
      disabled = True
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = Press SPACE to continue.
      wrapWidth = 1.35
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    KeyboardComponent cpdm_run_break3_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cpdm_run_break1
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    CodeComponent cpdm_run_break1_code
      Code Type = Auto->JS
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      Begin Experiment:
        cpdm_run_break_text = ""
        cpdm_space_text = ""
      Begin Routine:
        cpdm_unique_resps = []
        cpdm_unique_count = 0
        for i in run_resps:
            if i not in cpdm_unique_resps:
                cpdm_unique_count += 1
                cpdm_unique_resps.append(i)

        cpdm_run_break_text = ""
        cpdm_space_text = ""
        #filter for nonresponses
        if len(run_resps) < 190: #95% = 190 trials per block
            cpdm_run_break_text = "You failed to respond to " + str(200-len(run_resps)) + " trials and did not meet the 95% response rate requirement. \n \n The IDM Study will now close and you will not be eligible to receive payment or a bonus."
            cpdm_space_text = "Press SPACE to end."
            exp_proceed = False
            my_loop.addData("cpdm_subReject1", "< 95% resp rate")
            my_loop.addData("cpdm_subReject1_nonresps", 200-len(run_resps))
        #filter for single-button responses
        elif cpdm_unique_count < 2: #same for each exp
            cpdm_run_break_text = "You provided the same response to all " + str(len(run_resps)) + " trials. \n \n You did not follow task instructions. \n \n The IDM Study will now close and you will not be eligible to receive payment or a bonus."
            cpdm_space_text = "Press SPACE to end."
            exp_proceed = False
            my_loop.addData("cpdm_subReject2", "1key response")
            my_loop.addData("cpdm_subReject2_key", run_resps[0])
        #filter for poor performance on CPDM catch trials for low volatility blocks (14/20 catch trial criterion -- 5.77% of random success on 14/20 trials)
        elif "low_vol" in cpdm_run_dimension and sum(cpdm_catch_trials) < 14:
            cpdm_run_break_text = "Your performance on the previous trial block demonstrates you did not follow task instructions. \n \n The IDM Study will now close and you will not be eligible to receive payment or a bonus."
            cpdm_space_text = "Press SPACE to end."
            exp_proceed = False
            my_loop.addData("cpdm_subReject3LV", "LV catch fail")
            my_loop.addData("cpdm_subReject3LV_fails", 20-sum(cpdm_catch_trials))
        #filter for poor performance on CPDM catch trials for high volatility blocks (6/8 catch trial criterion -- 14.45% of random success on 7/8 trials)
        #elif "high_vol" in cpdm_run_dimension and sum(cpdm_catch_trials) < 6:
        #    cpdm_run_break_text = "Your performance on the previous trial block demonstrates you did not follow task instructions. \n \n The IDM Study will now close and you will not be eligible to receive payment or a bonus."
        #    cpdm_space_text = "Press SPACE to end."
        #    exp_proceed = False
        #    my_loop.addData("subReject3HV", "HV catch fail")
        #    my_loop.addData("subReject3HV_fails", 8-sum(cpdm_catch_trials))
        #all CPDM criterion are met -- good data
        else:
            #final run
            if condition_runs1.thisN == 1:
                cpdm_run_break_text = "You have completed the Visual Decision Making Task!"
                cpdm_space_text = "Press SPACE to continue."
            #first three runs
            else:
                cpdm_run_break_text = "Please feel free to take a short break. \n \n As you begin Block " + str(run_counter) + ", read the possible monetary values of each option carefully as they may have changed."
                cpdm_space_text = "Press SPACE to continue."
    TextComponent cpdm_run_break1_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Visual Decision Making Task *
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    TextComponent cpdm_run_break1_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $cpdm_run_break_text
      wrapWidth = 1.35
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    TextComponent cpdm_run_break1_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $cpdm_space_text
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    TextComponent cpdm_run_break1_OFF
      disabled = True
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = You completed the thing!
      wrapWidth = 1.35
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    TextComponent cpdm_run_break1_space_OFF
      disabled = True
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = Press SPACE to continue.
      wrapWidth = 1.35
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    KeyboardComponent cpdm_run_break1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine idm_comp_code
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    CodeComponent idm_code_code
      Code Type = Auto->JS
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      Begin Experiment:
        comp_code = ""
      Begin Routine:
        #completion code origination is now a 6 digit randomized code
        #previously linked to participant ID#
        comp_code = random.randint(100000, 999999)
        my_loop.addData("completion_code", comp_code)
    TextComponent idm_comp_code_header_txt
      letterHeight = 0.05
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Thank you for your participation!
        Your IDM Task Completion Code is:
    TextComponent idm_comp_code_num_txt
      color = 0.1216, 0.4745, 0.1216
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $comp_code
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    TextComponent idm_comp_code_instr_txt
      letterHeight = 0.04
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Return to Amazon Mechanical Turk and enter the completion code to receive credit for your participation and ensure payment.
      wrapWidth = 1.25
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    TextComponent idm_comp_code_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to exit session.
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    KeyboardComponent idm_comp_code_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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
  Routine cpdm_instr1
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    ImageComponent cpdm_instr1_img
      image = cpdm/cpdm_keys.png
      pos = (0, -0.06)
      saveStartStop = False
      size = (0.65, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent cpdm_instr1_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Visual Decision Making Task *
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    TextComponent cpdm_instr1_txt
      letterHeight = 0.0325
      pos = (0, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.35
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      text:
        You will be presented with a series of oriented patterns across multiple trials. Your job is to decide if the pattern is tilting to the left or right. In your response, you will also indicate how confident you are in your decision.
        There are four possible response combinations:










        For each trial, you will have 2 seconds to respond.
    TextComponent cpdm_instr1_Q_txt
      color = 1.0000, 0.6863, -1.0000
      letterHeight = 0.025
      pos = (-0.3, 0.07)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Press Q for LEFT tilt and HIGH confidence
    TextComponent cpdm_instr1_P_txt
      color = 1.0000, 0.6863, -1.0000
      letterHeight = 0.025
      pos = (0.3, 0.07)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Press P for RIGHT tilt and HIGH confidence
    TextComponent cpdm_instr1_A_txt
      color = 1.0000, 0.6863, -1.0000
      letterHeight = 0.025
      pos = (-0.3, -0.225)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Press A for LEFT tilt and LOW confidence
    TextComponent cpdm_instr1_L_txt
      color = 1.0000, 0.6863, -1.0000
      letterHeight = 0.025
      pos = (0.3, -0.225)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Press L for RIGHT tilt and LOW confidence
    TextComponent cpdm_instr1_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent cpdm_instr1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_instr1
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    TextComponent crdm_instr1_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Risk & Ambiguity Task *
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    TextComponent crdm_instr1_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        In this decision making task, you will be asked to make economic choices between:

        - Receiving a certain, smaller amount of money
        OR
        - Playing a lottery for the chance to win a larger amount of money

        Your choice for each trial will determine how much money you could earn if randomly selected as your bonus earnings trial.
    TextComponent crdm_instr1_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_instr2
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    TextComponent crdm_instr2_lottname_txt
      letterHeight = 0.05
      pos = (-0.2, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = *Playing the Lottery*
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    TextComponent crdm_instr2_txt
      letterHeight = 0.03
      pos = (-0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        The lottery consists of an imaginary bag containing 100 poker chips, some red and some blue. To play, you pull a random chip from the bag.

        The figure on the left represents the proportion of blue and red chips in the imaginary bag.

        Here, most chips are blue (75 of 100) and fewer are red (25 of 100).
    ImageComponent crdm_instr2_img
      image = crdm/risk_blue_75.bmp
      pos = (0.6, 0)
      saveStartStop = False
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent crdm_instr2_lott0_txt
      letterHeight = 0.04
      pos = (0.6, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$0
      wrapWidth = 1.5
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    TextComponent crdm_instr2_lott20_txt
      letterHeight = 0.04
      pos = (0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$20
      wrapWidth = 1.5
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    TextComponent crdm_instr2_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_instr3
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    TextComponent crdm_instr3_lottname_txt
      letterHeight = 0.05
      pos = (-0.2, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = *Playing the Lottery*
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    TextComponent crdm_instr3_txt
      letterHeight = 0.03
      pos = (-0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1
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      text:
        Given information about the number of blue and red chips in the bag, you can decide whether you would prefer a certain monetary outcome or if you would rather play the lottery for a chance to win a different amount.

        In this example, you have a 75% chance of pulling a blue chip and winning \$20. Conversely, you have a 25% chance of pulling a red chip and receiving \$0.

        The value for each color will change from bag to bag. Read the \$ amounts above the red and below the blue to know the value of each chip color.
    ImageComponent crdm_instr3_img
      image = crdm/risk_blue_75.bmp
      pos = (0.6, 0)
      saveStartStop = False
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent crdm_instr3_lott0_txt
      letterHeight = 0.04
      pos = (0.6, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$0
      wrapWidth = 1.5
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    TextComponent crdm_instr3_lott20_txt
      letterHeight = 0.04
      pos = (0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$20
      wrapWidth = 1.5
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    TextComponent crdm_instr3_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr3_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_instr4
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    TextComponent crdm_instr4_lottname_txt
      letterHeight = 0.05
      pos = (-0.2, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = *Playing the Lottery*
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    TextComponent crdm_instr4_txt
      letterHeight = 0.03
      pos = (-0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        For some lotteries, information about the bag contents may be partially hidden.

        In this example, at least 25 chips are blue and 25 chips are red. However, the color of the remaining 50 chips is unknown. The remaining 50 could be all red, all blue, or a combination of the two.
    ImageComponent crdm_instr4_img
      image = crdm/ambig_50.bmp
      pos = (0.6, 0)
      saveStartStop = False
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent crdm_instr4_lott0_txt
      letterHeight = 0.04
      pos = (0.6, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$0
      wrapWidth = 1.5
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    TextComponent crdm_instr4_lott20_txt
      letterHeight = 0.04
      pos = (0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$20
      wrapWidth = 1.5
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    TextComponent crdm_instr4_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr4_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_instr5
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    TextComponent crdm_instr5_txt
      letterHeight = 0.03
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = The lottery bag will appear at the center of the screen. The certain dollar amount will be presented on either the right or left side of the bag. Here, a certain \$5 would be the left option, and lottery would be the right option:
      wrapWidth = 1.5
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    ImageComponent crdm_instr5_img
      image = crdm/risk_blue_75.bmp
      pos = (0, -0.05)
      saveStartStop = False
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent crdm_instr5_lott_top_txt
      letterHeight = 0.04
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$0
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    TextComponent crdm_instr5_lott_bot_txt
      letterHeight = 0.04
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$20
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    TextComponent crdm_instr5_sure_txt
      letterHeight = 0.06
      pos = (-0.5, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$5
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    TextComponent crdm_instr5_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr5_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_instr6
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    TextComponent crdm_instr6_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Risk & Ambiguity Task *
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    TextComponent crdm_instr6_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        When the green circle appears, use the number keys at the top of your keyboard to indicate your choice:

        Press 1 to select the left option
        Press 2 to select the right option
    ImageComponent crdm_instr6_img
      image = crdm/crdm_2key.png
      pos = (0, -0.1)
      saveStartStop = False
      size = (0.6, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent crdm_instr6_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr6_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_instr7
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    TextComponent crdm_instr7_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Risk & Ambiguity Task *
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    TextComponent crdm_instr7_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.35
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      text:
        After each choice, you will be asked to rate your choice confidence.
        1 indicates you couldn't decide which option you preferred and chose at random, while 4 indicates total certainty in your choice. Use the number keys at the top of your keyboard to indicate your confidence:

        Press 1 - Not at all confident
        Press 2 - Less confident
        Press 3 - Somewhat confident
        Press 4 - Very confident
    ImageComponent crdm_instr7_img
      image = crdm/crdm_4key.png
      pos = (0, -0.15)
      saveStartStop = False
      size = (0.6, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent crdm_instr7_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr7_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cpdm_namer1
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    CodeComponent cpdm_namer1_code
      Code Type = JS
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      Begin JS Routine:
        cpdm_practice_loop_name = "cpdm_pract_trials1";
        cpdm_loop_name = "cpdm_trials1";
  Routine crdm_namer1
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    CodeComponent crdm_namer_code
      Code Type = JS
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      Begin JS Routine:
        crdm_practice_loop1_name = "crdm_pract1_trials1";
        crdm_questplus_loop_name = "crdm_qp_trials1";
        crdm_practice_loop2_name = "crdm_pract2_trials1";
        crdm_loop_name = "crdm_trials1";
  Routine cdd_namer1
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    CodeComponent cdd_namer1_code
      Code Type = JS
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      Begin JS Routine:
        cdd_practice_loop1_name = "cdd_pract1_trials1";
        cdd_questplus_loop_name = "cdd_qp_trials1";
        cdd_practice_loop2_name = "cdd_pract2_trials1";
        cdd_loop_name = "cdd_trials1";
  Routine cdd_instr1
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    TextComponent cdd_instr1_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Delay Discounting Task *
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    TextComponent cdd_instr1_txt
      letterHeight = 0.03
      pos = (0, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        In this decision making task, you will be asked indicate your preference between:

        - An amount of money you could receive today
        OR
        - An amount of money you could receive in the future

        The value of each option and the length of delay will change across trials. One of your choices in this section may be randomly selected as your *bonus earnings trial* at the end of the experiment.

        Example:
        - If you chose \$25 dollars immediately, you would receive \$25 today.
        - If you chose \$50 in 15 days, you would receive \$50 in 15 days.
    TextComponent cdd_instr1_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent cdd_instr1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cdd_instr2
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    TextComponent cdd_instr2_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Delay Discounting Task *
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    TextComponent cdd_instr2_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        Please read each options carefully. The immediate and delayed choices may switch sides.

        Press 1 to select the left option
        Press 2 to select the right option








        When the green circle appears, you will have 2 seconds to choose.
    ImageComponent cdd_instr2_img
      image = cdd/cdd_2key.png
      pos = (0, -0.05)
      saveStartStop = False
      size = (0.6, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent cdd_instr2_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent cdd_instr2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cdd_instr3
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    TextComponent cdd_instr3_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Delay Discounting Task *
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    TextComponent cdd_instr3_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.35
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      text:
        After each choice, you will be asked to rate your choice confidence.
        1 indicates you couldn't decide which option you preferred and chose at random, while 4 indicates total certainty in your choice. Use the number keys at the top of your keyboard to indicate your confidence:

        Press 1 - Not at all confident
        Press 2 - Less confident
        Press 3 - Somewhat confident
        Press 4 - Very confident
    ImageComponent cdd_instr3_img
      image = cdd/cdd_4key.png
      pos = (0, -0.15)
      saveStartStop = False
      size = (0.6, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent cdd_instr3_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent cdd_instr3_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cpdm_namer2
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    CodeComponent cpdm_namer2_code
      Code Type = JS
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      Begin JS Routine:
        cpdm_practice_loop_name = "cpdm_pract_trials2";
        cpdm_loop_name = "cpdm_trials2";
  Routine crdm_namer2
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    CodeComponent crdm_namer_code2
      Code Type = JS
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      Begin JS Routine:
        crdm_practice_loop1_name = "crdm_pract1_trials2";
        crdm_questplus_loop_name = "crdm_qp_trials2";
        crdm_practice_loop2_name = "crdm_pract2_trials2";
        crdm_loop_name = "crdm_trials2";
  Routine cdd_namer2
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    CodeComponent cdd_namer2_code
      Code Type = JS
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      Begin JS Routine:
        cdd_practice_loop1_name = "cdd_pract1_trials2";
        cdd_questplus_loop_name = "cdd_qp_trials2";
        cdd_practice_loop2_name = "cdd_pract2_trials2";
        cdd_loop_name = "cdd_trials2";
  Routine cpdm_namer3
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    CodeComponent cpdm_namer3_code
      Code Type = JS
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      Begin JS Routine:
        cpdm_practice_loop_name = "cpdm_pract_trials3";
        cpdm_loop_name = "cpdm_trials3";
  Routine idm_rand_select
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    CodeComponent idm_rand_select_code
      Code Type = JS
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      Begin JS Routine:
        exps = ["cpdm", "crdm", "cdd"];
        rand_idx = random.randint(0, 3);
        random_exp = exps[rand_idx];
        my_loop.addData("idm_bonus_exp", random_exp);
  Routine crdm_bonus
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    CodeComponent crdm_bonus_code
      Code Type = JS
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      Begin JS Routine:
        if (random_exp === "crdm") {
            continueRoutine = true;
        } else {
            continueRoutine = false;
        }
        exp = [];
        choice = [];
        money = [];
        trial_img = [];
        top = [];
        bottom = [];
        outcome = [];
        nonzero_side = [];
        domain = [];
        sure_amt = "";
        choice_text = "";
        outcome_color = [0, 0, 0];
        chip_color = [0, 0, 0];
        chip_text = "";
        choice_outcome = "";
        money_outcome = "";
        idx = Number.parseInt((random.random() * crdm_bonus_trials.length));
        [exp, choice, money, sure_amt, trial_img, top, bottom, outcome, nonzero_side, domain] = crdm_bonus_trials[idx];
        if ((random_exp === "crdm")) {
            my_loop.addData("crdm_bonus_choice", choice);
            my_loop.addData("crdm_bonus_amt", money);
        }
        money = format(money);
        //#top is always red, bottom is always blue
        red_nonzero = false;
        if ((nonzero_side === "top")) {
            red_nonzero = true;
        }

        // Text for bonus payment screen
        if ((choice === "sure")) { //Ss chose sure amt
            choice_text = "*CERTAIN*";
            outcome_color = [0.7098, 0.2941, (- 0.749)];
            chip_color = [0, 0, 0];
            chip_text = "";
            choice_outcome = ("$" + money.toString());
            money_outcome = "";
        } else { //Ss chose lottery
            choice_text = "*PLAY THE LOTTERY*";
            if ((red_nonzero === true)) { //red (top) is nonzero side
                if (((outcome === 1) && (domain === 1))) { //Ss won the lotto on gain trial
                    outcome_color = [0.9608, 0.0039, (- 0.1059)];
                    chip_color = [0.9608, 0.0039, (- 0.1059)];
                    choice_outcome = "A red chip"; //blue chip is drawn and is winning side (+$ == win some money)
                    chip_text = "was drawn and the outcome was";
                    money_outcome = ("$" + money.toString());
                } else {
                    if (((outcome === 1) && (domain === -1))) { //Ss won the lotto on loss trial
                        outcome_color = [(- 0.2157), 0.1686, 0.8588];
                        chip_color = [(- 0.2157), 0.1686, 0.8588];
                        choice_outcome = "A blue chip"; //blue chip is drawn and is winning side ($0 == lose no money)
                        chip_text = "was drawn and the outcome was";
                        money_outcome = ("$" + money.toString());
                    } else {
                        if (((outcome === 0) && (domain === 1))) { //Ss lost lotto on gain trial
                            outcome_color = [(- 0.2157), 0.1686, 0.8588];
                            chip_color = [(- 0.2157), 0.1686, 0.8588];
                            choice_outcome = "A blue chip"; //blue chip is drawn and is losing side ($0 == win no money)
                            chip_text = "was drawn and the outcome was";
                            money_outcome = ("$" + money.toString());
                        } else {
                            if (((outcome === 0) && (domain === -1))) { //Ss lost lotto on gloss trial
                                outcome_color = [0.9608, 0.0039, (- 0.1059)];
                                chip_color = [0.9608, 0.0039, (- 0.1059)];
                                choice_outcome = "A red chip"; //red chip is drawn and is losing side (-$ == lose some money)
                                chip_text = "was drawn and the outcome was";
                                money_outcome = ("$" + money.toString());
                            }
                        }
                    }
                }
            } else { //blue (bottom) is nonzero side
                if (((outcome === 1) && (domain === 1))) { //Ss won the lotto on gain trial
                    outcome_color = [(- 0.2157), 0.1686, 0.8588];
                    chip_color = [(- 0.2157), 0.1686, 0.8588];
                    choice_outcome = "A blue chip"; //blue chip is drawn and is winning side (+$ == win some money)
                    chip_text = "was drawn and the outcome was";
                    money_outcome = ("$" + money.toString());
                } else {
                    if (((outcome === 1) && (domain === -1))) { //Ss won the lotto on loss trial
                        outcome_color = [0.9608, 0.0039, (- 0.1059)];
                        chip_color = [0.9608, 0.0039, (- 0.1059)];
                        choice_outcome = "A red chip"; //red chip is drawn and is winning side ($0 == lose no money)
                        chip_text = "was drawn and the outcome was";
                        money_outcome = ("$" + money.toString());
                    } else {
                        if (((outcome === 0) && (domain === 1))) { //Ss lost lotto on gain trial
                            outcome_color = [0.9608, 0.0039, (- 0.1059)];
                            chip_color = [0.9608, 0.0039, (- 0.1059)];
                            choice_outcome = "A red chip"; //red chip is drawn and is losing side ($0 == win no money)
                            chip_text = "was drawn and the outcome was";
                            money_outcome = ("$" + money.toString());
                        } else {
                            if (((outcome === 0) && (domain === -1))) { //Ss lost lotto on gloss trial
                                outcome_color = [(- 0.2157), 0.1686, 0.8588];
                                chip_color = [(- 0.2157), 0.1686, 0.8588];
                                choice_outcome = "A blue chip";
                                chip_text = "was drawn and the outcome was"; //blue chip is drawn and is losing side (-$ == lose some money)
                                money_outcome = ("$" + money.toString());
                            }
                        }
                    }
                }
            }
        }
    TextComponent crdm_bonus_thanks_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.35
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      text:
        Your randomly selected *bonus earnings trial* is from the
        Risk & Ambiguity Task!
    TextComponent crdm_bonus_lott_top
      letterHeight = 0.04
      pos = (0.6, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $str("$"+str(format(top)))
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    ImageComponent crdm_bonus_img
      image [set every repeat] = $"crdm/" + trial_img
      pos = (0.6, -0.1)
      saveStartStop = False
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent crdm_bonus_lott_bot
      letterHeight = 0.04
      pos = (0.6, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $str("$"+str(format(bottom)))
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    TextComponent crdm_bonus_sure_amt_txt
      letterHeight = 0.04
      pos = (0.35, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $str("$"+str(format(sure_amt)))
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    TextComponent crdm_bonus_prompt_txt
      letterHeight = 0.04
      pos = (-0.2, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = In this trial, you chose:
      wrapWidth = 1
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    TextComponent crdm_bonus_choice_text_txt
      letterHeight = 0.05
      pos = (-0.2, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $choice_text
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    TextComponent crdm_bonus_choice_outcome_txt
      color [set every repeat] = $outcome_color
      letterHeight = 0.06
      pos = (-0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $choice_outcome
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    TextComponent crdm_bonus_drawn_txt
      letterHeight = 0.04
      pos = (-0.2, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $chip_text
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    PolygonComponent crdm_bonus_chip_poly
      fillColor [set every repeat] = $chip_color
      lineColor [set every repeat] = $chip_color
      saveStartStop = False
      shape = circle
      size = (0.075, 0.075)
      startVal [time (s)] = 0.0
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    TextComponent crdm_bonus_winnings_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.08
      pos = (-0.2, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $money_outcome
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    TextComponent crdm_bonus_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to receive your *COMPLETION CODE*
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    KeyboardComponent crdm_bonus_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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
  Routine idm_instr1
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    CodeComponent idm_instr1_code
      Code Type = JS
      disabled = True
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      Before JS Experiment:
        var cdd_conf_resps, cdd_trials, cpdm_trials, crdm_conf_resps, crdm_trials, exp_proceed, loop1, loop2, loop3, loop4, loop5, loop6, loop7, order;
        exp_proceed = true;
        crdm_conf_resps = [];
        cdd_conf_resps = [];
        cpdm_trials = [];
        crdm_trials = [];
        cdd_trials = [];
        loop1 = false;
        loop2 = false;
        loop3 = false;
        loop4 = false;
        loop5 = false;
        loop6 = false;
        loop7 = false;
        order = 0;
        //order = Number.parseInt((Math.random() * 6));
        if ((order === 0)) {
            loop1 = true;
            loop2 = true;
            loop3 = true;
        } else {
            if ((order === 1)) {
                loop1 = true;
                loop3 = true;
                loop5 = true;
            } else {
                if ((order === 2)) {
                    loop3 = true;
                    loop4 = true;
                    loop5 = true;
                } else {
                    if ((order === 3)) {
                        loop2 = true;
                        loop3 = true;
                        loop4 = true;
                    } else {
                        if ((order === 4)) {
                            loop3 = true;
                            loop5 = true;
                            loop7 = true;
                        } else {
                            if ((order === 5)) {
                                loop2 = true;
                                loop4 = true;
                                loop6 = true;
                            }
                        }
                    }
                }
            }
        }
    TextComponent idm_instr1_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Introspection and Decision Making Study *
      wrapWidth = 1.5
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    TextComponent idm_instr1_txt
      letterHeight = 0.03
      pos = (0, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        The computer-based decision making tasks will now begin. These tasks will be presented in random order. Opportunities will be provided for you to take breaks. Importantly, the IDM study must be completed in a single session. Do not close your browser until after you have received your *IDM Task Completion Code*

        At the end of the experiment, a single trial will be randomly-selected from one of the computer-based tasks. This trial is your "bonus earnings trial" and will determine the amount of your variable bonus. How much money you receive will depend on the choice you made on that specific trial, as per task instructions.

        In other words, each decision you make has a chance of actually happening! So make sure every choice *truly* reflects your preference.
    TextComponent idm_instr1_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent idm_instr1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_init_fix
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    PolygonComponent crdm_init_fix_poly
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine cdd_init_fix
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    PolygonComponent cdd_init_fix_polygon
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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
  Routine idm_surv1
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    CodeComponent idm_surv1_code
      Code Type = Auto->JS
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      Begin Routine:
        survbox1_color = [0,0,0]
        survbox2_color = [0,0,0]
        survbox3_color = [0,0,0]
        survbox4_color = [0,0,0]
        survbox5_color = [0,0,0]
        survbox6_color = [0,0,0]
        font_color1 = [0,0,0]
        font_color2 = [0,0,0]
        font_color3 = [0,0,0]
        font_color4 = [0,0,0]
        font_color5 = [0,0,0]
        font_color6 = [0,0,0]
        resp1_txt = ""
        resp2_txt = ""
        resp3_txt = ""
        resp4_txt = ""
        resp5_txt = ""
        resp6_txt = ""

        if resps == 2:
            surv_keylist = ["1", "2"]
            survbox1_color = "white"
            survbox2_color = "white"
            font_color1 = "white"
            font_color2 = "white"
            resp1_txt = resp1
            resp2_txt = resp2
        elif resps == 3:
            surv_keylist = ["1", "2", "3"]
            survbox1_color = "white"
            survbox2_color = "white"
            survbox3_color = "white"
            font_color1 = "white"
            font_color2 = "white"
            font_color3 = "white"
            resp1_txt = resp1
            resp2_txt = resp2
            resp3_txt = resp3
        elif resps == 4:
            surv_keylist = ["1", "2", "3", "4"]
            survbox1_color = "white"
            survbox2_color = "white"
            survbox3_color = "white"
            survbox4_color = "white"
            font_color1 = "white"
            font_color2 = "white"
            font_color3 = "white"
            font_color4 = "white"
            resp1_txt = resp1
            resp2_txt = resp2
            resp3_txt = resp3
            resp4_txt = resp4
        elif resps == 5:
            surv_keylist = ["1", "2", "3", "4", "5"]
            survbox1_color = "white"
            survbox2_color = "white"
            survbox3_color = "white"
            survbox4_color = "white"
            survbox5_color = "white"
            font_color1 = "white"
            font_color2 = "white"
            font_color3 = "white"
            font_color4 = "white"
            font_color5 = "white"
            resp1_txt = resp1
            resp2_txt = resp2
            resp3_txt = resp3
            resp4_txt = resp4
            resp5_txt = resp5
        elif resps == 6:
            surv_keylist = ["1", "2", "3", "4", "5", "6"]
            survbox1_color = "white"
            survbox2_color = "white"
            survbox3_color = "white"
            survbox4_color = "white"
            survbox5_color = "white"
            survbox6_color = "white"
            font_color1 = "white"
            font_color2 = "white"
            font_color3 = "white"
            font_color4 = "white"
            font_color5 = "white"
            font_color6 = "white"
            resp1_txt = resp1
            resp2_txt = resp2
            resp3_txt = resp3
            resp4_txt = resp4
            resp5_txt = resp5
            resp6_txt = resp6
      Each Frame:
        key = idm_surv1_resp.keys

        if resps == 2:
            if key == "1" or key == "2":
                continueRoutine = False
        elif resps == 3:
            if key == "1" or key == "2" or key == "3":
                continueRoutine = False
        elif resps == 4:
            if key == "1" or key == "2" or key == "3" or key == "4":
                continueRoutine = False
        elif resps == 5:
            if key == "1" or key == "2" or key == "3" or key == "4" or key == "5":
                continueRoutine = False
        elif resps == 6:
            if key == "1" or key == "2" or key == "3" or key == "4" or key == "5" or key == "6":
                continueRoutine = False
      End Routine:
        surv_key = idm_surv1_resp.keys

        if surv_key == "1":
            survey1.addData("surv1_resp", resp1)
        elif surv_key == "2":
            survey1.addData("surv1_resp", resp2)
        elif surv_key == "3":
            survey1.addData("surv1_resp", resp3)
        elif surv_key == "4":
            survey1.addData("surv1_resp", resp4)
        elif surv_key == "5":
            survey1.addData("surv1_resp", resp5)
        elif surv_key == "6":
            survey1.addData("surv1_resp", resp6)
    TextComponent idm_surv1_question_txt
      letterHeight = 0.04
      pos = (-0.4, 0.0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $question
      wrapWidth = 0.5
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    PolygonComponent idm_surv1_1
      fillColor = [0,0,0]
      lineColor [set every repeat] = $survbox1_color
      lineWidth = 10
      pos = (0.3, 0.35)
      saveStartStop = False
      shape = rectangle
      size = (0.6, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent idm_surv1_1_txt
      letterHeight = 0.03
      pos = (0.3, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $resp1_txt
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    PolygonComponent idm_surv1_2
      fillColor = [0,0,0]
      lineColor [set every repeat] = $survbox2_color
      lineWidth = 10
      pos = (0.3, 0.2)
      saveStartStop = False
      shape = rectangle
      size = (0.6, 0.10)
      startVal [time (s)] = 0.0
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    TextComponent idm_surv1_2_txt
      letterHeight = 0.03
      pos = (0.3, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $resp2_txt
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    PolygonComponent idm_surv1_3
      fillColor = [0,0,0]
      lineColor [set every repeat] = $survbox3_color
      lineWidth = 10
      pos = (0.3, 0.05)
      saveStartStop = False
      shape = rectangle
      size = (0.6, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent idm_surv1_3_txt
      letterHeight = 0.03
      pos = (0.3, 0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $resp3_txt
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    PolygonComponent idm_surv1_4
      fillColor = [0,0,0]
      lineColor [set every repeat] = $survbox4_color
      lineWidth = 10
      pos = (0.3, -0.1)
      saveStartStop = False
      shape = rectangle
      size = (0.6, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent idm_surv1_4_txt
      letterHeight = 0.03
      pos = (0.3, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $resp4_txt
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    PolygonComponent idm_surv1_5
      fillColor = [0,0,0]
      lineColor [set every repeat] = $survbox5_color
      lineWidth = 10
      pos = (0.3, -0.25)
      saveStartStop = False
      shape = rectangle
      size = (0.6, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent idm_surv1_5_txt
      letterHeight = 0.03
      pos = (0.3, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $resp5_txt
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    PolygonComponent idm_surv1_6
      fillColor = [0,0,0]
      lineColor [set every repeat] = $survbox6_color
      lineWidth = 10
      pos = (0.3, -0.4)
      saveStartStop = False
      shape = rectangle
      size = (0.6, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent idm_surv1_6_txt
      letterHeight = 0.03
      pos = (0.3, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $resp6_txt
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    TextComponent idm_surv1_key1
      color [set every repeat] = $font_color1
      letterHeight = 0.04
      pos = (0.05, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent idm_surv1_key2
      color [set every repeat] = $font_color2
      letterHeight = 0.04
      pos = (0.05, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent idm_surv1_key3
      color [set every repeat] = $font_color3
      letterHeight = 0.04
      pos = (0.05, 0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 3
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    TextComponent idm_surv1_key4
      color [set every repeat] = $font_color4
      letterHeight = 0.04
      pos = (0.05, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 4
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    TextComponent idm_surv1_key5
      color [set every repeat] = $font_color5
      letterHeight = 0.04
      pos = (0.05, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 5
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    TextComponent idm_surv1_key6
      color [set every repeat] = $font_color6
      letterHeight = 0.04
      pos = (0.05, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 6
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    KeyboardComponent idm_surv1_resp
      allowedKeys = "1", "2", "3", "4", "5", "6"
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine idm_surv2
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    CodeComponent idm_surv2_code_2
      Code Type = Auto->JS
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      End Routine:
        surv_key = idm_surv2_resp.keys

        if surv_key == "1":
            survey2.addData("surv2_resp", resp1)
        elif surv_key == "2":
            survey2.addData("surv2_resp", resp2)
        elif surv_key == "3":
            survey2.addData("surv2_resp", resp3)
        elif surv_key == "4":
            survey2.addData("surv2_resp", resp4)
        elif surv_key == "5":
            survey2.addData("surv2_resp", resp5)
    TextComponent idm_surv2_stim_txt
      letterHeight = 0.05
      pos = (-0.4, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1
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      text:
        I can always accurately
        perceive when
    TextComponent idm_surv2_question_txt
      letterHeight = 0.05
      pos = (-0.4, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $question
      wrapWidth = 0.7
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    PolygonComponent idm_surv2_1
      fillColor = [0,0,0]
      lineWidth = 10
      pos = (0.3, 0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.6, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent idm_surv2_1_txt
      letterHeight = 0.03
      pos = (0.3, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Strongly Agree
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    PolygonComponent idm_surv2_2
      fillColor = [0,0,0]
      lineWidth = 10
      pos = (0.3, 0.15)
      saveStartStop = False
      shape = rectangle
      size = (0.6, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent idm_surv2_2_txt
      letterHeight = 0.03
      pos = (0.3, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Agree
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    PolygonComponent idm_surv2_3
      fillColor = [0,0,0]
      lineWidth = 10
      pos = (0.3, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.6, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent idm_surv2_3_txt
      letterHeight = 0.03
      pos = (0.3, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Neither Agree or Disagree
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    PolygonComponent idm_surv2_4
      fillColor = [0,0,0]
      lineWidth = 10
      pos = (0.3, -0.15)
      saveStartStop = False
      shape = rectangle
      size = (0.6, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent idm_surv2_4_txt
      letterHeight = 0.03
      pos = (0.3, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Disagree
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    PolygonComponent idm_surv2_5
      fillColor = [0,0,0]
      lineWidth = 10
      pos = (0.3, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.6, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent idm_surv2_5_txt
      letterHeight = 0.03
      pos = (0.3, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Strongly Disagree
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    TextComponent idm_surv2_key1
      letterHeight = 0.04
      pos = (0.05, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent idm_surv2_key2
      letterHeight = 0.04
      pos = (0.05, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent idm_surv2_key3
      letterHeight = 0.04
      pos = (0.05, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 3
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    TextComponent idm_surv2_key4
      letterHeight = 0.04
      pos = (0.05, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 4
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    TextComponent idm_surv2_key5
      letterHeight = 0.04
      pos = (0.05, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 5
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    KeyboardComponent idm_surv2_resp
      allowedKeys = "1", "2", "3", "4", "5"
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine idm_surv2_intro
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    TextComponent idm_surv2_intro_title_txt
      color = 0.1216, 0.4745, 0.1216
      letterHeight = 0.06
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Interoceptive Accuracy Scale *
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    TextComponent idm_surv2_intro_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        The following survey consists of 21 five-point scale questions about your ability to perceive internal physiological states and should take less than 5 minutes to complete.

        Please use the number keys at the top of your keyboard to indicate your response.

        The number associated with each response is displayed to the left.
    TextComponent idm_surv2_intro_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent idm_surv2_intro_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine idm_surv1_intro
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    TextComponent idm_surv1_intro_title_txt
      color = 0.1216, 0.4745, 0.1216
      letterHeight = 0.06
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Demographics Survey *
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    TextComponent idm_surv1_intro_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        The following survey contains 11 multiple choice questions and should take less than 5 minutes to complete.

        Please use the number keys at the top of your keyboard to indicate your response.

        The number associated with each response is displayed to the left.
    TextComponent idm_surv1_intro_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent idm_surv1_intro_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine idm_instr2
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    TextComponent idm_instr2_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Introspection and Decision Making Study *
      wrapWidth = 1.5
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    TextComponent idm_instr2_cursor_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        During this experiment, all responses will be made using your keyboard.

        Before you begin, please take this moment to move your mouse cursor to the edge of the screen.
    TextComponent idm_instr2_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent idm_instr2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine idm_term_check
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    CodeComponent idm_term_check_code
      Code Type = JS
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      Begin JS Routine:
        if ((exp_proceed === false)) {
            psychoJS.quit();
        }
  Routine cpdm_instr3
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    TextComponent cpdm_instr3_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Visual Decision Making Task *
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    TextComponent cpdm_instr3_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        There are four (4) blocks of 200 trials.

        Your choice for each trial will determine how much money you could earn if that trial is randomly selected as your *bonus earnings* trial. The monetary values for each of the four responses may change from block to block. These values will be provided before each block, so pay careful attention.
    TextComponent cpdm_instr3_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent cpdm_instr3_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cpdm_instr2
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    TextComponent cpdm_instr2_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Visual Decision Making Task *
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    TextComponent cpdm_instr2_instr_txt
      letterHeight = 0.03
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = You can tell "tilt" by which direction the top of the pattern is pointing:
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    ImageComponent cpdm_instr2_left_arrow
      image = cpdm/arrow.png
      pos = (-0.4, 0.05)
      saveStartStop = False
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
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    GratingComponent cpdm_instr2_left_gabor
      contrast = 0.2
      mask = gauss
      ori = -5
      pos = (-0.4, -0.1)
      saveStartStop = False
      sf = 6
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      tex = sin
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    TextComponent cpdm_instr2_left_txt
      letterHeight = 0.03
      pos = (-0.4, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = This pattern tilts LEFT
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    ImageComponent cpdm_instr2_right_arrow
      flipHoriz = True
      image = cpdm/arrow.png
      pos = (0.4, 0.05)
      saveStartStop = False
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
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    GratingComponent cpdm_instr2_right_gabor
      contrast = 0.2
      mask = gauss
      ori = 5
      pos = (0.4, -0.1)
      saveStartStop = False
      sf = 6
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      tex = sin
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    TextComponent cpdm_instr2_right_txt
      letterHeight = 0.03
      pos = (0.4, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = This pattern tilts RIGHT
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    TextComponent cpdm_instr2_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent cpdm_instr2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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
  Routine idm_consent1
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    CodeComponent idm_BEGIN_JS
      Code Type = JS
      Before JS Experiment:
        var cdd_conf_resps, cdd_bonus_trials, cpdm_bonus_trials, crdm_bonus_trials, crdm_conf_resps, exp_proceed, loop1, loop2, loop3, loop4, loop5, loop6, loop7, order;
        exp_proceed = true;
        crdm_conf_resps = [];
        cdd_conf_resps = [];
        cpdm_bonus_trials = [];
        crdm_bonus_trials = [];
        cdd_bonus_trials = [];
        loop1 = false;
        loop2 = false;
        loop3 = false;
        loop4 = false;
        loop5 = false;
        loop6 = false;
        loop7 = false;
        //order = 2;
        order = Number.parseInt((Math.random() * 6));
        if ((order === 0)) {
            loop1 = true;
            loop2 = true;
            loop3 = true;
        } else {
            if ((order === 1)) {
                loop1 = true;
                loop3 = true;
                loop5 = true;
            } else {
                if ((order === 2)) {
                    loop3 = true;
                    loop4 = true;
                    loop5 = true;
                } else {
                    if ((order === 3)) {
                        loop2 = true;
                        loop3 = true;
                        loop4 = true;
                    } else {
                        if ((order === 4)) {
                            loop3 = true;
                            loop5 = true;
                            loop7 = true;
                        } else {
                            if ((order === 5)) {
                                loop2 = true;
                                loop4 = true;
                                loop6 = true;
                            }
                        }
                    }
                }
            }
        }
      Begin JS Experiment:
        //function for random.random used in python

        const formatter = new Intl.NumberFormat('en-US', {
          minimumFractionDigits: 2,
          maximumFractionDigits: 2,
        });
        format = formatter.format;


        arange_round = function(start,end,step=null) {
            if (step === null)
                step = 1;
            var arr = [];
            if (end > start) {
                for (var i=start; Math.round(i*10)/10 < end; i+=step) {
                    arr.push(Math.round(i*10)/10);
                }
            } else {
                for (var i=start; Math.round(i*10)/10 > end; i+=step) {
                    arr.push(Math.round(i*10)/10);
                }
            }
            return arr;
        }

        random_weighted_choice = function(items, weights){
            var i;
            for (i = 0; i < weights.length; i++)
                weights[i] += weights[i - 1] || 0;
            var random = Math.random() * weights[weights.length - 1];
            for (i = 0; i < weights.length; i++)
                if (weights[i] > random)
                    break;
            return items[i]
        }


        range = function(start_stop, post_stop, step=1) {
            //# create a list sequence with a starting point, stopping point, and step size
            //#  the step size is assumed 1 if not provided
            //#  the first value is considered the stopping point if the second value is not given,
            //#   in which case the starting point is assumed to be 0.
            //#  post_stop is the non-inclusive end point.
            var arr = [];
            if (post_stop != undefined) {
                for (var i = start_stop; i < post_stop; i += step) {
                    arr.push(i);
                }
            } else {
                for (var i = 0; i < start_stop; i += step) {
                    arr.push(i);
                }
            }
            return arr;
        }

        arange = function(start_stop, post_stop, step=1, rounding=2) {
            //# same as range(), but with rounding built-in
            //# create a list sequence with a starting point, stopping point, and step size
            //#  the step size is assumed 1 if not provided
            //#  the first value is considered the stopping point if the second value is not given,
            //#   in which case the starting point is assumed to be 0.
            //#  post_stop is the non-inclusive end point.
            var arr = [];
            if (post_stop != undefined) {
                if (post_stop < start_stop) {
                    for (var i = start_stop; i > post_stop; i += step) {
                        arr.push(round(i, rounding))
                    }
                } else {
                    for (var i = start_stop; i < post_stop; i += step) {
                        arr.push(round(i, rounding))
                    }
                }
            } else {
                if (start_stop < 0) {
                    for (var i = 0; i > start_stop; i += step) {
                        arr.push(round(i, rounding))
                    }
                } else {
                    for (var i = 0; i < start_stop; i += step) {
                        arr.push(round(i, rounding))
                    }
                }
            }
            return arr;
        }
    TextComponent idm_consent1_welcome_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Welcome to the Introspection and Decision Making Study 
      wrapWidth = 1.5
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    TextComponent idm_consent1_info_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        The Introspection and Decision Making research study is intended for the scientific purpose of furthering our understanding of how people make decisions and their confidence regarding those choices.

        The following consent information describes the study and is intended to help inform your choice to participate.
    TextComponent idm_consent1_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent idm_consent1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine idm_consent2
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    TextComponent idm_consent2_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Information on this Research
      wrapWidth = 1.5
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    TextComponent idm_consent2_info_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        The Introspection and Decision Making (IDM) study is conducted by the Computational Decision Neuroscience laboratory (CDN; Principal Investigator Dr. Silvia Lopez-Guzman) at the National Institute of Mental Health.

        Participation in the IDM study is entirely voluntary. You are not required to participate and refusal to do so will in no way affect access to any services or benefits.

        If you choose to participate, you may quit at any time without penalty.
    TextComponent idm_consent2_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent idm_consent2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine idm_consent3
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    TextComponent idm_consent3_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Why are we conducting this study?
      wrapWidth = 1.5
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    TextComponent idm_consent3_info_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        Decision making is a complex process in which individuals evaluate and select between different options and/or courses of action. Understanding these principles and how our brain supports decision making is important not only for learning about healthy cognition and behavior, but also informs treatment to help those with certain mental health conditions.

        Here, we are investigating the relationship between decision making and value-based judgments. Additionally, we are interested in how people reflect upon, and the degree to which they are confident in, these choices.
    TextComponent idm_consent3_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent idm_consent3_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine idm_consent4
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    TextComponent idm_consent4_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = What will I be asked to do and how long will it take?
      wrapWidth = 1.5
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    TextComponent idm_consent4_info_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        In total, your participation is expected to take approximately 1 hours and 15 minutes: 2-3 minutes to complete 2 surveys, and 70 minutes to complete 3 computer-based tasks.

        The first survey includes questions about demographic information, mental health history, and past/present substance use. The second survey assesses your ability to detect and recognize certain internal body states (e.g., hunger, thirst).
    TextComponent idm_consent4_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent idm_consent4_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine idm_consent5
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    TextComponent idm_consent5_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = What will I be asked to do and how long will it take?
      wrapWidth = 1.5
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    TextComponent idm_consent5_info_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        The 3 computer-based tasks include:

        1. Visual Decision Making Task (~38 minutes). Make judgments about the tilt of an oriented pattern and your confidence about your decision.

        2. Risk & Ambiguity Task (~14 minutes). Choose between (1) receiving a certain smaller amount of money, or (2) playing a lottery for the chance to win a larger amount. Then rate how confidently you feel your choice truly reflects your preference.

        3. Delay Discounting Task (~18 minutes). Choose between (1) a smaller amount of money received today, or (2) a larger amount of money received in the future. Then rate how confidently you feel your choice truly reflects your preference.
    TextComponent idm_consent5_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent idm_consent5_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine idm_consent6
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    TextComponent idm_consent6_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = What are the benefits and risks of participating in the study?
      wrapWidth = 1.5
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    TextComponent idm_consent6_info_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.35
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      text:
        There are no direct benefits from participating in this research study. In addition, this study involves minimal risk to participants. However, the potential loss or compromise of confidentiality is a risk for all research in which data is collected from human participants. Loss or compromise of confidentiality involves the unauthorized access and/or use of participant data.

        To minimize risk of data loss or compromise of confidentiality, Amazon Mechanical Turk (MTurk) will not collect any experimental data and CDN researchers will not have access to any personal identifiable information MTurk collects for the creation of your account. All tasks and questionnaires will be conducted on Pavlovia, a secure website separate from MTurk. Data you provide on Pavlovia will only be linked to your worker ID temporarily to ensure credit/compensation. Once data collection is complete, information linking your MTurk worker ID to data collected through Pavlovia will be destroyed.
    TextComponent idm_consent6_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent idm_consent6_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine idm_consent7
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    TextComponent idm_consent7_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Will I receive compensation for participating in this research study?
      wrapWidth = 1.5
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    TextComponent idm_consent7_info_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.35
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      text:
        Your participation and earnest performance completing the two surveys and three computer-based tasks will entitle you to a fixed, standard compensation.

        In addition, you may also receive a variable bonus. A single trial will be randomly-selected from one of three computer-based tasks. You will receive the monetary value associated with your specific choice on that trial, as per task instructions. The variable bonus encourages you to make each choice based on your true preference, as any trial has the chance to be made real with actual money.

        **IMPORTANT**

        1. Missing too many trials or responding in a manner that indicates you are not engaged with the task or do not understand instructions will result in the experiment terminating prematurely. You will not be compensated if the experiment is terminated for these reasons.

        2. You can only be paid for completing this study once. If you complete the IDM study a second time, you will not receive additional compensation.
    TextComponent idm_consent7_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent idm_consent7_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine idm_consent8
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    TextComponent idm_consent8_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Who can I talk to if I have questions?
      wrapWidth = 1.5
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    TextComponent idm_consent8_info_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.35
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      text:
        If you have any questions or concerns regarding participation, contact the principal investigator:

        Dr. Silvia Lopez-Guzman
        NIMHCDN@mail.nih.gov
    TextComponent idm_consent8_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent idm_consent8_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine idm_consent9
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    TextComponent idm_consent9_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Consent to Participate
      wrapWidth = 1.5
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    TextComponent idm_consent9_info_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        If, after reading and understanding this consent information, you...



        *AGREE TO PARTICIPATE*
        Press the SPACE button on your keyboard to continue the IDM study.
        By doing so, you indicate you (1) are at least 18 years old, (2) have read and understand the provided consent information, and (3) agree to participate in the IDM study.



        *DO NOT AGREE TO PARTICIPATE*
        Press the "ESC" button on your keyboard twice to exit the IDM study.
    KeyboardComponent idm_consent9_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cpdm_instr4
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    TextComponent cpdm_instr4_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Visual Decision Making Task *
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    TextComponent cpdm_instr4_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        As you provide your responses, please note some pattern tilts will be harder to determine than others. On these trials, you may be less confident than on trials where the tilt is more obvious.

        Please remember to distiguish between trials in which you feel high and low confidence regarding the tilt of the pattern.
    TextComponent cpdm_instr4_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent cpdm_instr4_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine idm_warn2
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    TextComponent idm_warn2_title_txt
      color = 0.8824, 0.0039, 0.0039
      letterHeight = 0.06
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = *Reminder*
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    TextComponent idm_warn2_warning_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        Please remember if you respond to fewer than 95% of trials, or provide responses which indicate you are not following task instructions, the EXPERIMENT WILL END and you will not receive any form of payment or bonus.

        If you do not wish to continue, you can end the task at any time by pressing the ESC button twice.

        Please remain engaged throughout the experiment and provide earnest, sincere responses for each trial. Remember, your choices could help you walk away with an additional bonus ranging from \$2 to \$65, depending on the seleced *bonus earnings trial*!
    TextComponent idm_warn2_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent idm_warn2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine idm_warn1
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    TextComponent idm_warn1_title_txt
      color = 0.8824, 0.0039, 0.0039
      letterHeight = 0.06
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = *Warning*
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    TextComponent idm_warn1_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        Please note if you do not respond to at least 95% of task trials, or provide responses which indicate you are not following task instructions, the EXPERIMENT WILL END and you will not receive any form of bonus payment.

        If you do not wish to continue, you may quit at any time by pressing the ESC button twice.

        Your ability to follow task instructions will be assessed at each stage of the experiment. Please pay attention to all instructions. Read each screen carefully to ensure you understand what to do. Practice trials are provided to teach you how each task is performed.

        Please do your best and remain engaged throughout the entire experiment.
    TextComponent idm_warn1_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent idm_warn1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cpdm_warn
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    TextComponent cpdm_warn1_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Visual Decision Making Task *
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    TextComponent cpdm_warn1_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        IMPORTANT: The experiment will end if you (1) miss more than 5% of trials per block, or (2) provide responses which indicate you did not understand, or are not following, task instructions. If this happens, you will not be eligible to receive payment or a bonus.

        Please remain engaged throughout the experiment and provide earnest, sincere responses for each trial. Thank you for your participation!
    TextComponent cpdm_warn1_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent cpdm_warn1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cdd_warn
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    TextComponent cdd_warn1_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Delay Discounting Task *
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    TextComponent cdd_warn1_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        IMPORTANT: You must answer both the choice and confidence prompts to complete each trial. The experiment will end if you (1) miss more than 5% of trials, or (2) provide responses which indicate you did not understand, or are not following, task instructions. If this happens, you will not be eligible to receive payment or a bonus.

        Please remain engaged throughout the experiment and provide earnest, sincere responses for each trial. Thank you for your participation!
    TextComponent cdd_warn1_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent cdd_warn1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_warn
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    TextComponent crdm_warn1_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Risk & Ambiguity Task *
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    TextComponent crdm_warn1_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        IMPORTANT: You must answer both the choice and confidence prompts to complete each trial. The experiment will end if you (1) miss more than 5% of trials, or (2) provide responses which indicate you did not understand, or are not following, task instructions. If this happens, you will not be eligible to receive payment or a bonus.

        Please remain engaged throughout the experiment and provide earnest, sincere responses for each trial. Thank you for your participation!
    TextComponent crdm_warn1_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_warn1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_pract1_instr
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    TextComponent crdm_pract1_instr_name_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Risk & Ambiguity Task *
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    TextComponent crdm_pract1_instr_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        In this first section, you will only be asked to indicate your choice between the certain outcome and the lottery. You will not be asked to rate your choice confidence.

        When the green circle appears, indicate your decision by pressing 1 for the left option and 2 for the right option.

        Let's practice!
    TextComponent crdm_pract1_instr_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to begin.
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    KeyboardComponent crdm_pract1_instr_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_pract1_trial
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    CodeComponent crdm_pract1_trial_code
      Code Type = JS
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      Begin JS Experiment:
        crdm_sure_pos1 = [];
        crdm_sure_resp1 = [];
        crdm_msg1 = "";
        crdm_pos1 = [[(- 0.5), 0], [0.5, 0]];
        crdm_resp1 = ["1", "2"];
      Begin JS Routine:
        my_loop = eval(crdm_practice_loop1_name);

        crdm_idx1 = random.randint(0, 2); //Math.round(Math.random() * (1- 0) + 0);
        crdm_sure_pos1 = crdm_pos1[crdm_idx1];
        crdm_sure_resp1 = crdm_resp1[crdm_idx1];
      End JS Routine:
        crdm_pract1_key = crdm_pract1_trial_resp.keys;
        crdm_pract1_sure_key = crdm_pract1_trial_resp.corr;
        my_loop.addData("crdm_trial_type", "practice1");
    ImageComponent crdm_pract1_trial_img
      image [set every repeat] = $"crdm/" + crdm_img1
      saveStartStop = False
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent crdm_pract1_trial_lott_top_txt
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $str("$"+str(format(crdm_lott_top1)))
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    TextComponent crdm_pract1_trial_lott_bot_txt
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $str("$"+str(format(crdm_lott_bot1)))
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    TextComponent crdm_pract1_trial_sure_amt_txt
      letterHeight = 0.06
      pos [set every repeat] = crdm_sure_pos1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text [set every repeat]:
        $str("$"+str(format(crdm_sure_amt1)))
    PolygonComponent GRFX_fix4
      fillColor = [0,0,0]
      lineColor = [0,0,0]
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 2
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    PolygonComponent crdm_pract1_trial_cue
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, 1.0000, -1.0000
      saveStartStop = False
      shape = circle
      size = (0.04, 0.04)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 2
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    KeyboardComponent crdm_pract1_trial_resp
      allowedKeys = '1', '2'
      correctAns = $crdm_sure_resp1
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3
      stopVal [duration (s)] = 2
      store = first key
      storeCorrect = True
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  Routine crdm_questplus
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    CodeComponent crdm_questplus_JS
      Code Type = JS
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      Begin JS Experiment:
        crdm_sure_pos_qp = [];
        crdm_sure_resp_qp = [];
        crdm_msg_qp = "";
        crdm_pos_qp = [[(- 0.5), 0], [0.5, 0]];
        crdm_resp_qp = ["1", "2"];

        weighted_avg = function(q) {
            var fits = [];
            var weight = 0;
            // q.param_domain, q.posterior
            var i, l;
            l = q.param_domain[0].length;
            while (fits.length < l) {
                fits.push(0);
            }
            for (i = 0; i < q.posterior.length; i++) {
                for (l = 0; l < fits.length; l++) {
                    fits[l] += q.param_domain[i][l] * q.posterior[i];
                }
                weight += q.posterior[i];
            }
            for (l = 0; l < fits.length; l++) {
                fits[l] /= weight;
            }
            return fits;
        }

        // Sqrt(sum(w * (x - wm)^2) / sum(w))
        weighted_sd = function(q) {
            var fits = [];
            var weight = 0;
            var i, l;
            var wm = weighted_avg(q);
            l = q.param_domain[0].length;
            while (fits.length < l) {
                fits.push(0);
            }
            for (i = 0; i < q.posterior.length; i++) {
                for (l = 0; l < fits.length; l++) {
                    fits[l] += q.posterior[i] * Math.pow((q.param_domain[i][l] - wm[l]), 2);
                }
                weight += q.posterior[i];
            }
            for (l = 0; l < fits.length; l++) {
                fits[l] /= weight;
                fits[l] = Math.sqrt(fits[l])
            }
            return fits;
        }

        crdm_value_space = [5, 8, 20, 40, 50];
        crdm_ambiguity_space = [0, 0.24, 0.5, 0.74];
        crdm_probability_space = [0.13, 0.25, 0.38, 0.5, 0.75];
        crdm_value_certain = 5;

        // parameter space
        crdm_alpha_space = arange_round(0.1, 3.1, 0.1);
        crdm_beta_space =  arange_round(-1.3, 1.31, 0.1);
        crdm_gamma_space =  arange_round(0.5, 5.1, 0.5);

        crdm_i = 0;
        crdm_j = 0;
        crdm_k = 0;
        crdm_stim_space = []; // set for gain domain
        for (crdm_i = 0; crdm_i < crdm_value_space.length; crdm_i++) {
            for (crdm_j = 0; crdm_j < crdm_ambiguity_space.length; crdm_j++) {
                for (crdm_k = 0; crdm_k < crdm_probability_space.length; crdm_k++) {
                    if (!crdm_ambiguity_space[crdm_j] || crdm_probability_space[crdm_k] == 0.5) {
                        crdm_stim_space.push([crdm_value_space[crdm_i], crdm_ambiguity_space[crdm_j], crdm_probability_space[crdm_k], crdm_value_certain]);
                    }
                }
            }
        }
        crdm_gain_stim_space = crdm_stim_space;

        crdm_stim_space = []; // reset for loss domain
        for (crdm_i = 0; crdm_i < crdm_value_space.length; crdm_i++) {
            for (crdm_j = 0; crdm_j < crdm_ambiguity_space.length; crdm_j++) {
                for (crdm_k = 0; crdm_k < crdm_probability_space.length; crdm_k++) {
                    if (!crdm_ambiguity_space[crdm_j] || crdm_probability_space[crdm_k] == 0.5) {
                        crdm_stim_space.push([-crdm_value_space[crdm_i], crdm_ambiguity_space[crdm_j], crdm_probability_space[crdm_k], -crdm_value_certain]);
                    }
                }
            }
        }
        crdm_loss_stim_space = crdm_stim_space;

        crdm_params = [crdm_alpha_space, crdm_beta_space, crdm_gamma_space];
        crdm_response = true;

        // risk and ambiguity model
        function SV_option_RA(stimulus_values, params) {
            var prob;
            var objective_value = stimulus_values[0];
            var ambiguity = stimulus_values[1];
            var probability = stimulus_values[2];
            var value_certain = stimulus_values[3];
            var alpha_subject_risk_aversion = params[0];
            var beta_ambiguity_aversion = params[1];
            var sv_reward, sv_null, tmp;
            sv_reward = Math.sign(objective_value) * (probability - beta_ambiguity_aversion * (ambiguity/2)) * Math.pow(Math.abs(objective_value), alpha_subject_risk_aversion);
            sv_null = Math.sign(objective_value) * Math.pow(Math.abs(value_certain), alpha_subject_risk_aversion);
            var gamma = params[2];
            prob = 1. / (1 + Math.exp(-gamma * (sv_reward - sv_null)));
            return prob;
        }

        // subjective value decision
        function draw_from(stimulus_value, params, func) {
            var prob = func(stimulus_value, params);
            if (Math.random() < prob)
                return 1;
            else
                return 0;
        }

        // # uses contrast_idx instead of contrast for efficiency
        crdm_contrast_idx_gain = parseInt(Math.random() * crdm_stim_space.length);
        crdm_contrast_idx_loss = parseInt(Math.random() * crdm_stim_space.length);

        crdm_func = SV_option_RA;
        crdm_q_gain = new QuestPlus(crdm_stim_space, crdm_params, crdm_func);
        crdm_q_loss = new QuestPlus(crdm_stim_space, crdm_params, crdm_func);
      Begin JS Routine:
        my_loop = eval(crdm_questplus_loop_name);
        crdm_idx_qp = random.randint(0, 2); //Math.round(Math.random() * (1- 0) + 0);
        crdm_sure_pos_qp = crdm_pos_qp[crdm_idx_qp];
        crdm_sure_resp_qp = crdm_resp_qp[crdm_idx_qp];

        if (crdm_domain_type == 'gain') { //GAINS - get ambiguity, probability, and lott top & bottom
            crdm_sure_amt_qp = crdm_gain_stim_space[crdm_contrast_idx_gain][3];
            crdm_ambiguity = crdm_gain_stim_space[crdm_contrast_idx_gain][1];
            if (!crdm_ambiguity) {
                crdm_probability = crdm_gain_stim_space[crdm_contrast_idx_gain][2];
            } else {
                crdm_probability = 0.5;
            }
            if (crdm_nonzero_side == 'top') {
                crdm_lott_top_qp = crdm_gain_stim_space[crdm_contrast_idx_gain][0];
                crdm_lott_bot_qp = 0;
            } else {
                crdm_lott_top_qp = 0;
                crdm_lott_bot_qp = crdm_gain_stim_space[crdm_contrast_idx_gain][0];
            }
        } else { //LOSSES - get ambiguity, probability, and lott top & bottom
            crdm_sure_amt_qp = crdm_loss_stim_space[crdm_contrast_idx_loss][3];
            crdm_ambiguity = crdm_loss_stim_space[crdm_contrast_idx_loss][1];
            if (!crdm_ambiguity) {
                crdm_probability = crdm_loss_stim_space[crdm_contrast_idx_loss][2];
            } else {
                crdm_probability = 0.5;
            }
            if (crdm_nonzero_side == 'top') {
                crdm_lott_top_qp = crdm_loss_stim_space[crdm_contrast_idx_loss][0];
                crdm_lott_bot_qp = 0;
            } else {
                crdm_lott_top_qp = 0;
                crdm_lott_bot_qp = crdm_loss_stim_space[crdm_contrast_idx_loss][0];
            }
        }

        if (crdm_ambiguity) { //set current image
            crdm_img_qp = 'ambig_' + parseInt(crdm_ambiguity * 100) + '.bmp';
        } else {
            if (crdm_lott_top_qp != 0) {
                crdm_img_qp = 'risk_red_' + parseInt(crdm_probability * 100) + '.bmp'
            } else {
                crdm_img_qp = 'risk_blue_' + parseInt(crdm_probability * 100) + '.bmp'
            }
        }
      End JS Routine:
        crdm_qp_key = crdm_questplus_trial_resp.keys;
        crdm_qp_sure_key = crdm_questplus_trial_resp.corr;

        crdm_response = !crdm_qp_sure_key;
        if (crdm_domain_type == 'gain'){
            // update posterior
            crdm_q_gain.update(crdm_contrast_idx_gain, crdm_response);
            // find next contrast index
            crdm_contrast_idx_gain = crdm_q_gain.next_contrast();
            crdm_post_mean = weighted_avg(crdm_q_gain);
            crdm_post_sd = weighted_sd(crdm_q_gain);
        } else {
            crdm_q_loss.update(crdm_contrast_idx_loss, crdm_response);
            crdm_contrast_idx_loss = crdm_q_loss.next_contrast();
            crdm_post_mean = weighted_avg(crdm_q_loss);
            crdm_post_sd = weighted_sd(crdm_q_loss);
        }

        my_loop.addData("crdm_trial_type", "questplus");
        my_loop.addData("crdm_response", crdm_response);
        my_loop.addData("crdm_mean_alpha", crdm_post_mean[0]);
        my_loop.addData("crdm_mean_beta", crdm_post_mean[1]);
        my_loop.addData("crdm_mean_gamma", crdm_post_mean[2]);
        my_loop.addData("crdm_sd_alpha", crdm_post_sd[0]);
        my_loop.addData("crdm_sd_beta", crdm_post_sd[1]);
        my_loop.addData("crdm_sd_gamma", crdm_post_sd[2]);
        my_loop.addData("crdm_lott_reward", crdm_lott_top_qp + crdm_lott_bot_qp);
        my_loop.addData("crdm_lott_prob", Number.parseInt((crdm_probability * 100)));
        my_loop.addData("crdm_ambig_level", Number.parseInt((crdm_ambiguity * 100)));
    CodeComponent crdm_questplus_py
      Code Type = Py
      disabled = True
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      Begin Experiment:
        #position of certain amount option
        sure_pos = []
        sure_resp = []
        crdm_msg = ""

        #stimuli positions and respective responses
        pos = [[-0.5, 0], [0.5, 0]] #left/right screen locations
        resp = ["1", "2"] #1 = left, 2 = right
      Begin Routine:
        my_loop = eval("questplus_trials")

        #random index for certain outcome position and response
        idx = random.randint(0,1)
        sure_pos = pos[idx]
        sure_resp = resp[idx]
        ado_lott_top = ""
        ado_lott_bot = ""
        ado_img = ""

        #setting important parameters based on domain (gain/loss)
        if trial_type == "gain":
            log_lik, ent, log_post, sets = g_log_lik, g_ent, g_log_post, g_sets
            mutual_info = rg.get_MI(log_lik, ent, log_post) #ricardo_gain.py
        else: #losses
            log_lik, ent, log_post, sets = l_log_lik, l_ent, l_log_post, l_sets
            mutual_info = rl.get_MI(log_lik, ent, log_post) #ricardo_loss.py


        # GET_DESIGN based on maximum Mutual Information
        idx_design = np.argmax(mutual_info)
        cur_design = sets.choice.iloc[idx_design].to_dict()

        if nonzero_side == "top": #red side of lotto
            ado_lott_top = cur_design["value_reward"] #nonzero value on top (red)
            ado_lott_bot = 0
            if cur_design["amb_level"] == 0: #risk trial
                ado_img = "risk_red_{0}.bmp".format(int(cur_design["p_reward"]*100))
            else: #ambiguity trial
                ado_img = "ambig_{0}.bmp".format(int(cur_design["amb_level"]*100))
        else: #blue side of lotto
            ado_lott_top = 0
            ado_lott_bot = cur_design["value_reward"] #nonzero value on bottom (blue)
            if cur_design["amb_level"] == 0: #risk trial
                ado_img = "risk_blue_{0}.bmp".format(int(cur_design["p_reward"]*100))
            else: #ambiguity trial
                ado_img = "ambig_{0}.bmp".format(int(cur_design["amb_level"]*100))
        ado_sure_amt = cur_design["value_null"] #sure amount
      End Routine:
        qp_key = crdm_questplus_trial_resp.keys
        qp_sure_key = crdm_questplus_trial_resp.corr
        my_loop.addData("crdm_trial_type", "questplus")

        cur_response = not qp_sure_key #flips .corr convention
        if trial_type == "gain": #gain -- ricardo_gain.py
            mutual_info, log_post = rg.update_MI(sets.choice, sets.response, cur_design, cur_response, log_lik, ent, log_post)
            post_mean = rg.get_post_mean(np.exp(log_post), sets.param)
            post_sd = rg.get_post_sd(np.exp(log_post), sets.param)
            g_log_lik, g_ent, g_log_post, g_sets = log_lik, ent, log_post, sets
        else: #loss -- ricardo_loss.py
            mutual_info, log_post = rl.update_MI(sets.choice, sets.response, cur_design, cur_response, log_lik, ent, log_post)
            post_mean = rl.get_post_mean(np.exp(log_post), sets.param)
            post_sd = rl.get_post_sd(np.exp(log_post), sets.param)
            l_log_lik, l_ent, l_log_post, l_sets = log_lik, ent, log_post, sets

        my_loop.addData("response", cur_response)
        my_loop.addData('mean_alpha', post_mean[0])
        my_loop.addData('mean_beta', post_mean[1])
        my_loop.addData('mean_gamma', post_mean[2])
        my_loop.addData('sd_alpha', post_sd[0])
        my_loop.addData('sd_beta', post_sd[1])
        my_loop.addData('sd_gamma', post_sd[2])
        my_loop.addData("lott_reward", cur_design["value_reward"])
        my_loop.addData("lott_prob", int(cur_design["p_reward"]*100))
        my_loop.addData("ambig_level", int(cur_design["amb_level"]*100))
    ImageComponent crdm_questplus_img
      image [set every repeat] = $"crdm/" + crdm_img_qp
      saveStartStop = False
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent crdm_questplus_trial_lott_top_txt
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $str("$"+str(format(crdm_lott_top_qp)))
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    TextComponent crdm_questplus_trial_lott_bot_txt
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $str("$"+str(format(crdm_lott_bot_qp)))
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    TextComponent crdm_questplus_trial_sure_amt_txt
      letterHeight = 0.06
      pos [set every repeat] = crdm_sure_pos_qp
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text [set every repeat]:
        $str("$"+str(format(crdm_sure_amt_qp)))
    PolygonComponent GRFX_fix3
      fillColor = [0,0,0]
      lineColor = [0,0,0]
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 2
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    PolygonComponent crdm_questplus_trial_cue
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, 1.0000, -1.0000
      saveStartStop = False
      shape = circle
      size = (0.04, 0.04)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 2
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    KeyboardComponent crdm_questplus_trial_resp
      allowedKeys = '1', '2'
      correctAns = $crdm_sure_resp_qp
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3
      stopVal [duration (s)] = 2
      store = first key
      storeCorrect = True
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  Routine crdm_qp_feedback
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    CodeComponent crdm_qp_feedback_code
      Code Type = JS
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      Begin JS Routine:
        if ((crdm_qp_key === undefined)) {
            crdm_msg_qp = "NO RESPONSE";
        } else {
            if (crdm_qp_sure_key) {
                crdm_msg_qp  = ("CERTAIN $" + format(crdm_sure_amt_qp.toString()));
            } else {
                crdm_msg_qp  = "LOTTERY";
            }
        }
    TextComponent crdm_qp_feedback_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $crdm_msg_qp
      wrapWidth = 1.5
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  Routine crdm_schedule_gen
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    CodeComponent crdm_schedule_gen_JS
      Code Type = JS
      Begin JS Routine:
        //# because Pavlovia doesn't auto-convert append or extend to push,
        //#  make the same functions work for any javascript array by affecting the prototype
        Array.prototype.append = Array.prototype.push
        Array.prototype.extend = function(arr){this.push(...arr)};

        //# avoid using the "function name(){}" syntax
        //#  to account for Pavlovia's scope problems.

        range = function(start_stop, post_stop, step=1) {
            //# create a list sequence with a starting point, stopping point, and step size
            //#  the step size is assumed 1 if not provided
            //#  the first value is considered the stopping point if the second value is not given,
            //#   in which case the starting point is assumed to be 0.
            //#  post_stop is the non-inclusive end point.
            var arr = [];
            if (post_stop != undefined) {
                for (var i = start_stop; i < post_stop; i += step) {
                    arr.push(i);
                }
            } else {
                for (var i = 0; i < start_stop; i += step) {
                    arr.push(i);
                }
            }
            return arr;
        }

        arange = function(start_stop, post_stop, step=1, rounding=2) {
            //# same as range(), but with rounding built-in
            //# create a list sequence with a starting point, stopping point, and step size
            //#  the step size is assumed 1 if not provided
            //#  the first value is considered the stopping point if the second value is not given,
            //#   in which case the starting point is assumed to be 0.
            //#  post_stop is the non-inclusive end point.
            var arr = [];
            if (post_stop != undefined) {
                if (post_stop < start_stop) {
                    for (var i = start_stop; i > post_stop; i += step) {
                        arr.push(round(i, rounding))
                    }
                } else {
                    for (var i = start_stop; i < post_stop; i += step) {
                        arr.push(round(i, rounding))
                    }
                }
            } else {
                if (start_stop < 0) {
                    for (var i = 0; i > start_stop; i += step) {
                        arr.push(round(i, rounding))
                    }
                } else {
                    for (var i = 0; i < start_stop; i += step) {
                        arr.push(round(i, rounding))
                    }
                }
            }
            return arr;
        }

        clone = function(arr) {
            //# recursive function to deep copy arrays and dictionaries
            var loops, tmp;
            //# see if it is an array
            //#  check a couple of things to try to avoid objects with these keys
            if (Array.isArray(arr)) {
                loops = arr;
                tmp = [];
            } else {
                loops = Object.keys(arr);
                tmp = {};
            }
            loops.forEach(function(val) {
                var value;
                //# if the looped items are the array, push() to a list
                if (loops === arr) {
                    value = val;
                    if (typeof(value) == "object") {
                        //# if the subelement is another complex object,
                        //#  then clone it as well.
                        tmp.push(clone(value));
                    } else {
                        tmp.push(value);
                    }
                } else { //# if the looped items are the dictionary
                         //#  add them with the key
                    value = arr[val];
                    if (typeof(value) == "object") {
                        //# if the subelement is another complex object,
                        //#  then clone it as well.
                        tmp[val] = clone(value);
                    } else {
                        tmp[val] = value;
                    }
                }
            })
            return tmp;
        }

        sum = function(arr){return arr.reduce((partialSum, a) => partialSum + a, 0)}


        random = {
            //# contains useful random number generation functions
            "random" : function(start_stop=1, post_stop=undefined, count=1) {
                var results = [];
                range(count).forEach(function() {
                    if (post_stop != undefined) {
                        if (post_stop < start_stop) {
                            var tmp = post_stop;
                            post_stop = start_stop;
                            start_stop = tmp;
                        }
                        results.push((start_stop + Math.random() * (post_stop - start_stop)));
                    } else {
                        //# if post_stop is not defined, start_stop is the non-inclusive max value.
                        results.push((Math.random() * start_stop));
                    }
                });
                if (count == 1)
                    return results[0];
                    return results;
            },

            "randint" : function(start_stop, post_stop, count=1) {
                var results = [];
                range(count).forEach(function() {
                    //# Math.random() never gives exactly 1, so it
                    //#  never reaches the provided max value.
                    if (post_stop != undefined) {
                        if (post_stop < start_stop) {
                            var tmp = post_stop;
                            post_stop = start_stop;
                            start_stop = tmp;
                        }
                        results.push(parseInt(start_stop + Math.random() * (post_stop - start_stop)));
                    } else {
                        //# if post_stop is not defined, start_stop is non-inclusive max value
                        results.push(parseInt(Math.random() * start_stop));
                    }
                });
                if (count == 1)
                    return results[0];
                    return results;
            },

            "choice" : function(arr, count=1, with_replacement=true) {
                var results = [];
                if (with_replacement) {
                    range(count).forEach(function() {
                        results.push(arr[random.randint(arr.length)]);
                    });
                } else {
                    //# make shallow copy to choose from.
                    //#  you can always clone returned result if you want unique copies,
                    //#  and it makes no difference for arrays of primitives
                    //#  (like numeric indices or string keys).
                    var tmp = [...arr];
                    range(count).forEach(function() {
                        if (tmp.length == 0)
                            //# refill array
                            tmp = [...arr];
                            results.push(tmp.splice(random.randint(tmp.length), 1));
                    });
                }
                if (count == 1)
                    return results[0];
                    return results;
            }
        }



        crdm_fit_gain = weighted_avg(crdm_q_gain) //# parameters for gains
        crdm_fit_loss = weighted_avg(crdm_q_loss) //# parameters for losses

        //# global variables
        alpha_gain = crdm_fit_gain[0];
        alpha_loss = crdm_fit_loss[0];
        beta_gain = crdm_fit_gain[1];
        beta_loss = crdm_fit_loss[1];
        prob = 0.5;
        amb = 0;
        crdm_steps = 4;
        //# domain: gain = 1, loss = -1

        append_trial = function(trials, safe_sv, lott_sv, lott, safe, prob, amb, sv_half, domain) {
            //# appends trial info for presentation and output
            trials["crdm_safe_sv"].append(safe_sv);
            trials["crdm_lott_sv"].append(lott_sv);
            trials["crdm_lott"].append(lott);
            trials["crdm_sure_amt"].append(safe);
            trials["crdm_lott_p"].append(prob);
            trials["crdm_amb_lev"].append(amb);
            trials["crdm_delta_sv"].append(lott_sv - safe_sv);
            trials["crdm_domain"].append(domain);
        }

        lottery2sv = function(objective_value, alpha_risk_aversion, beta_ambiguity_aversion, probability, ambiguity) {
            //# converts lottery option value from money space --> subjective value space
            //# domain considered where function is called
            return Math.sign(objective_value) * (probability - beta_ambiguity_aversion * (ambiguity/2))
                   * Math.pow(Math.abs(objective_value), alpha_risk_aversion);
        }

        round2fiddy = function(number) {
            //# rounding all money values to nearest $0.50
            return Math.round(number * 2)/2;
        }

        safe2sv = function(subjective_value, alpha) { //# deprecated
            //# converts safe option value from money space --> subjective value space
            return Math.sign(subjective_value) * Math.pow(Math.abs(subjective_value), alpha);
        }

        sort_it = function(arr) {
            //# sort ascending (used for SVs)
            arr.sort(function(a, b){return a - b});
        }

        sv2money = function(subjective_value, domain, alpha, beta, prob, amb) {
            //# based on whether you provide beta, converts each value in the
            //#  subjective value (safe & lottery) range --> money spaces
            var money;
            if (beta === undefined) { //# beta isn't used for safe money
                //# compute safe money using inverse of SV formula
                //#  gain - money(V) = 1*SV**1/alpha
                //#  loss - money(V) = -1*SV**1/alpha
                money = round2fiddy(domain * Math.pow(Math.abs(subjective_value), 1/alpha));
            } else {
                //# compute lottery money using inverse of SV formula
                //#  gain - money(V) = 1*(SV/P-B*A/2)**1/alpha
                //#  loss - money(V) = -1*(SV/P-B*A/2)**1/alpha
                money = round2fiddy(domain * Math.pow(Math.abs(subjective_value)/(prob - beta * amb/2), 1/alpha));
            }
            //# constrains min and max lottery $ and ensure correct sign for gain/loss
            money = domain * Math.min(50, Math.max(0.5, Math.abs(money)));
            return money
        }

        make_sample_sv_ranges = function(domain, alpha, beta, prob, amb, steps) {
            //# calculates SVdeltas and corresponding monetary values
            var sv_max = domain * lottery2sv(50, alpha, beta, prob, amb); //# maximum possible lottery value ($ --> SV space)
            var sv_min = 0; //# domain * safe2sv(0.5, alpha); //#minimum possible lottery value ($ --> SV space)
            var sv_half = sv_max/2; //# SV of trial halfway between 0 and max lottery gain (true center)
            var step_size = (sv_max - sv_min)/(2 * steps - 1);
            var space = arange(sv_min, sv_max + step_size/2, step_size);
            return [space, sv_half];
        }

        crdm_trials_dict = {"crdm_safe_sv":[], "crdm_lott_sv":[], "crdm_lott":[], "crdm_sure_amt":[], //# dict for trial variables
                            "crdm_lott_p":[], "crdm_amb_lev":[], "crdm_delta_sv":[], "crdm_domain":[]};

        generate_trials = function(trials, domain, alpha, beta, steps) {
            //# creates trial schedule for each domain (gain/loss)
            var amb_space = [0.24, 0.5, 0.74]; //# possible ambiguity values
            var prob_space = [0.13, 0.25, 0.38, 0.5, 0.75]; //# possible probability values
            var trials_per = 9; //# number of trials per unique prob/amb option
            var choice_idxs = [0,1,2,3,3.5,4,5,6,7];
            var delta_idx = range(8); //# index of trials_remaining_per_sv_delta array

            prob_space.forEach(function(prob) {
                //# non-ambiguity trials
                var tmp = make_sample_sv_ranges(domain, alpha, beta, prob, 0, steps);
                var svs = tmp[0]; //# get list of SV quadrants
                var sv_half = tmp[1]; //# get SV_half
                range(trials_per).forEach(function(_, tidx) { //# for each of 9 trials per prob
                    var choice_idx = choice_idxs[tidx]; //# current sample index
                    if (choice_idx != parseInt(choice_idx)) { //# if not an integer
                        var inty = parseInt(choice_idx); //# turn it into integer
                        choice_idx = random.randint(inty, inty + 2); //# randomly sample within two steps
                    }
                    var subspace_sv = svs[choice_idx]; //# specific random SV for curr quad
                    var lott = sv2money(subspace_sv, domain, alpha, beta, prob, 0); //# specific lottery $ for curr quad
                    var safe = sv2money(sv_half, domain, alpha); //# specific safe $ for curr quad
                    append_trial(trials, sv_half, subspace_sv, lott, safe, prob, 0, sv_half, domain); //# save to trials dict
                });

            });

            amb_space.forEach(function(amb) {
                //# ambiguity trials
                var tmp = make_sample_sv_ranges(domain, alpha, beta, 0.5, amb, steps);
                var svs = tmp[0]; //# get list of SV quadrants
                var sv_half = tmp[1]; //# get SV_half
                range(trials_per).forEach(function(_, tidx) { //# for each of 9 trials per amb
                    var choice_idx = choice_idxs[tidx]; //# current sample index
                    if (choice_idx != parseInt(choice_idx)) { //# if not an integer
                        var inty = parseInt(choice_idx); //# turn it into integer
                        choice_idx = random.randint(inty, inty + 2); //# randomly sample within two steps
                    }
                    var subspace_sv = svs[choice_idx]; //# specific random SV for curr quad
                    var lott = sv2money(subspace_sv, domain, alpha, beta, 0.5, amb); //# specific lottery $ for curr quad
                    var safe = sv2money(sv_half, domain, alpha); //# specific safe $ for curr quad
                    append_trial(trials, sv_half, subspace_sv, lott, safe, 0.5, amb, sv_half, domain); //# save to trials dict
                });

            });
        }

        //# generate schedule for each domain
        generate_trials(crdm_trials_dict, 1, alpha_gain, beta_gain, crdm_steps); //# gain trials
        //generate_trials(crdm_trials_dict, -1, alpha_loss, beta_loss, crdm_steps); //# loss trials
  Routine crdm_pract2_trial
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    CodeComponent crdm_pract2_trial_code
      Code Type = JS
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      Begin JS Experiment:
        crdm_sure_pos2 = [];
        crdm_sure_resp2 = [];
        crdm_crdm_msg2 = "";
        crdm_pos2 = [[(- 0.5), 0], [0.5, 0]];
        crdm_resp2 = ["1", "2"];
      Begin JS Routine:
        my_loop = eval(crdm_practice_loop2_name);
        crdm_idx2 = random.randint(0, 2); //Math.round(Math.random() * (1- 0) + 0);
        crdm_sure_pos2 = crdm_pos2[crdm_idx2];
        crdm_sure_resp2 = crdm_resp2[crdm_idx2];
      End JS Routine:
        crdm_pract2_key = crdm_pract2_trial_resp.keys;
        crdm_pract2_sure_key = crdm_pract2_trial_resp.corr;
        my_loop.addData("crdm_trial_type", "practice2");
    ImageComponent crdm_pract2_trial_img
      image [set every repeat] = $"crdm/" + crdm_img2
      saveStartStop = False
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent crdm_pract2_trial_lott_top_txt
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $str("$"+str(format(crdm_lott_top2)))
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    TextComponent crdm_pract2_trial_lott_bot_txt
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $str("$"+str(format(crdm_lott_bot2)))
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    TextComponent crdm_pract2_trial_sure_amt_txt
      letterHeight = 0.06
      pos [set every repeat] = crdm_sure_pos2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text [set every repeat]:
        $str("$"+str(format(crdm_sure_amt2)))
    PolygonComponent GRFX_fix2
      fillColor = [0,0,0]
      lineColor = [0,0,0]
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 2
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    PolygonComponent crdm_pract2_trial_cue
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, 1.0000, -1.0000
      saveStartStop = False
      shape = circle
      size = (0.04, 0.04)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 2
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    KeyboardComponent crdm_pract2_trial_resp
      allowedKeys = '1', '2'
      correctAns = $crdm_sure_resp2
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3
      stopVal [duration (s)] = 2
      store = first key
      storeCorrect = True
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  Routine crdm_pract2_feedback
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    CodeComponent crdm_pract2_feedback_code
      Code Type = JS
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      Begin JS Routine:
        if ((crdm_pract2_key === undefined)) {
            crdm_msg2 = "NO RESPONSE";
        } else {
            if (crdm_pract2_sure_key) {
                crdm_msg2 = ("CERTAIN $" + format(crdm_sure_amt2.toString()));
            } else {
                crdm_msg2 = "LOTTERY";
            }
        }
    TextComponent crdm_pract2_feedback_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $crdm_msg2
      wrapWidth = 1.5
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  Routine crdm_pract2_conf
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    CodeComponent crdm_pract2_conf_code
      Code Type = Both
      Begin JS Routine:
        if ((crdm_pract2_key === undefined))  {
            continueRoutine = false;
        }
        conf1_color = [0, 0, 0];
        conf2_color = [0, 0, 0];
        conf3_color = [0, 0, 0];
        conf4_color = [0, 0, 0];
      Begin Routine:
        #Ss did not respond
        if len(crdm_pract2_key) == 0:
            continueRoutine = False

        #set default gray for all four response boxes
        conf1_color = [0, 0, 0]
        conf2_color = [0, 0, 0]
        conf3_color = [0, 0, 0]
        conf4_color = [0, 0, 0]
      Each Frame:
        #resp is received
        crdm_pract_conf_key = crdm_pract2_conf_resp.keys
        if len(crdm_pract_conf_key) == 1:
            #not at all confident
            if crdm_pract_conf_key == "1":
                #change box color to indicate selection
                conf1_color = "darkgray"
                conf2_color = [0,0,0]
                conf3_color = [0,0,0]
                conf4_color = [0,0,0]
            #less confident
            elif crdm_pract_conf_key == "2":
                conf1_color = [0,0,0]
                conf2_color = "darkgray"
                conf3_color = [0,0,0]
                conf4_color = [0,0,0]
            #somewhat confident
            elif crdm_pract_conf_key == "3":
                conf1_color = [0,0,0]
                conf2_color = [0,0,0]
                conf3_color = "darkgray"
                conf4_color = [0,0,0]
            #very confident
            elif crdm_pract_conf_key == "4":
                conf1_color = [0,0,0]
                conf2_color = [0,0,0]
                conf3_color = [0,0,0]
                conf4_color = "darkgray"
      Each JS Frame:
        crdm_pract_conf_key = crdm_pract2_conf_resp.keys;
        if (!(crdm_pract_conf_key == undefined) && (crdm_pract_conf_key.length === 1)) {
            if ((crdm_pract_conf_key === "1")) {
                conf1_color = "darkgray";
                conf2_color = [0, 0, 0];
                conf3_color = [0, 0, 0];
                conf4_color = [0, 0, 0];
            } else {
                if ((crdm_pract_conf_key === "2")) {
                    conf1_color = [0, 0, 0];
                    conf2_color = "darkgray";
                    conf3_color = [0, 0, 0];
                    conf4_color = [0, 0, 0];
                } else {
                    if ((crdm_pract_conf_key === "3")) {
                        conf1_color = [0, 0, 0];
                        conf2_color = [0, 0, 0];
                        conf3_color = "darkgray";
                        conf4_color = [0, 0, 0];
                    } else {
                        if ((crdm_pract_conf_key === "4")) {
                            conf1_color = [0, 0, 0];
                            conf2_color = [0, 0, 0];
                            conf3_color = [0, 0, 0];
                            conf4_color = "darkgray";
                        }
                    }
                }
            }
        }
      End JS Routine:
        conf1_color = [0, 0, 0];
        conf2_color = [0, 0, 0];
        conf3_color = [0, 0, 0];
        conf4_color = [0, 0, 0];

        crdm_conf1.setFillColor(new util.Color(conf1_color), false);
        crdm_conf2.setFillColor(new util.Color(conf2_color), false);
        crdm_conf3.setFillColor(new util.Color(conf3_color), false);
        crdm_conf4.setFillColor(new util.Color(conf4_color), false);
    TextComponent crdm_pract2_conf_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = How confident are you in your choice?
      wrapWidth = 1.5
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    PolygonComponent crdm_pract2_conf1
      fillColor [set every frame] = $conf1_color
      lineWidth = 10
      pos = (-0.6, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent crdm_pract2_conf1_txt
      letterHeight = 0.04
      pos = (-0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Not at all
        confident

        1
    PolygonComponent crdm_pract2_conf2
      fillColor [set every frame] = $conf2_color
      lineWidth = 10
      pos = (-0.2, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent crdm_pract2_conf2_txt
      letterHeight = 0.04
      pos = (-0.2, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Less
        confident

        2
    PolygonComponent crdm_pract2_conf3
      fillColor [set every frame] = $conf3_color
      lineWidth = 10
      pos = (0.2, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent crdm_pract2_conf3_txt
      letterHeight = 0.04
      pos = (0.2, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Somewhat
        confident

        3
    PolygonComponent crdm_pract2_conf4
      fillColor [set every frame] = $conf4_color
      lineWidth = 10
      pos = (0.6, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent crdm_pract2_conf4_txt
      letterHeight = 0.04
      pos = (0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Very
        confident

        4
    KeyboardComponent crdm_pract2_conf_resp
      allowedKeys = '1', '2', '3', '4'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine crdm_pract2_iti1
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    CodeComponent crdm_pract2_iti1_code
      Code Type = JS
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      Begin JS Routine:
        if (!(crdm_pract2_trials1.thisTrialN === undefined) && (crdm_pract2_trials1.thisTrialN === 2)) {
            continueRoutine = false;
        }
    PolygonComponent crdm_pract2_iti1_poly
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine crdm_pract1_feedback
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    CodeComponent crdm_pract1_feedback_code
      Code Type = Both
      Begin JS Routine:
        if ((crdm_pract1_key === undefined)) {
            crdm_msg1 = "NO RESPONSE";
        } else {
            if (crdm_pract1_sure_key) {
                crdm_msg1 = ("CERTAIN $" + format(crdm_sure_amt1.toString()));
            } else {
                crdm_msg1 = "LOTTERY";
            }
        }
      Begin Routine:
        if len(crdm_pract1_key) == 0: #Ss did not respond
            crdm_msg1 = "NO RESPONSE"
        elif crdm_pract1_sure_key: #Ss chose sure amt
            crdm_msg1 = "CERTAIN $" + str(format(crdm_sure_amt1))
        else: #Ss chose lottery
            crdm_msg1 = "LOTTERY"
    TextComponent crdm_pract1_feedback_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $crdm_msg1
      wrapWidth = 1.5
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  Routine crdm_qp_instr
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    TextComponent crdm_qp_instr_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Risk & Ambiguity Task *
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    TextComponent crdm_qp_instr_txt
      letterHeight = 0.03
      pos = (0, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        Now that you've practiced, we'll begin the first section of the task. You will have 3 seconds to consider and 2 seconds to respond for each trial. Please make your choice when the green circle appears on the screen.

        It is very important for you to answer each of the following trials.
    TextComponent crdm_qp_instr_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to begin.
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    KeyboardComponent crdm_qp_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_pract2_instr
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    TextComponent crdm_pract2_instr_name_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Risk & Ambiguity Task *
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    TextComponent crdm_pract2_instr_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        In this second section, you will now be asked to provide a confidence rating after your choice.

        When the green circle appears, indicate your decision by pressing 1 for the left option and 2 for the right option. Next, you will rate your choice confidence. Please be sure to answer both the task and confidence questions!

        Let's practice!
    TextComponent crdm_pract2_instr_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to begin.
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    KeyboardComponent crdm_pract2_instr_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_pract2_iti2
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    CodeComponent crdm_pract2_iti2_code
      Code Type = JS
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      Begin JS Routine:
        if (!(crdm_pract2_trials2.thisTrialN == undefined) && (crdm_pract2_trials2.thisTrialN === 2)) {
            continueRoutine = false;
        }
    PolygonComponent crdm_pract2_iti2_poly
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine cdd_pract1_feedback
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    CodeComponent cdd_pract1_feedback_py
      Code Type = Both
      Begin JS Routine:
        if ((cdd_pract1_key === undefined)) {
            cdd_msg1 = "NO RESPONSE";
        } else {
            if (cdd_pract1_immed_key) {
                cdd_msg1 = "$ NOW";
            } else {
                cdd_msg1 = "$ LATER";
            }
        }
      Begin Routine:
        if len(cdd_pract1_key) == 0: #Ss did not respond
            cdd_msg1 = "NO RESPONSE"
        elif cdd_pract1_immed_key: #Ss chose smaller, immediate option
            cdd_msg1 = "$ NOW"
        else: #Ss chose larger, delayed option
            cdd_msg1 = "$ LATER"
    TextComponent cdd_pract1_feedback_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $cdd_msg1
      wrapWidth = 1.25
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  Routine cdd_pract1_trial
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    CodeComponent cdd_pract1_trial_code
      Code Type = JS
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      Begin JS Experiment:
        cdd_immed_pos1 = [];
        cdd_delay_pos1 = [];
        cdd_immed_resp1 = [];
        cdd_msg1 = "";
        cdd_pos1 = [[(- 0.5), 0], [0.5, 0]];
        cdd_resp1 = ["1", "2"];
      Begin JS Routine:
        my_loop = eval(cdd_practice_loop1_name);
        cdd_idx1 = random.randint(0, 2); //Math.round(Math.random() * (1- 0) + 0);
        cdd_immed_pos1 = cdd_pos1[cdd_idx1];
        cdd_immed_resp1 = cdd_resp1[cdd_idx1];

        if ((cdd_idx1 === 0)) {
            cdd_delay_pos1 = cdd_pos1[1];
        } else {
            cdd_delay_pos1 = cdd_pos1[0];
        }
      End JS Routine:
        cdd_pract1_key = cdd_pract1_trial_resp.keys;
        cdd_pract1_immed_key = cdd_pract1_trial_resp.corr;
        my_loop.addData("cdd_trial_type", "practice1");
    PolygonComponent cdd_pract1_trial_left_poly
      fillColor = 0,0,0
      lineWidth = 10
      pos = (-0.5, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent cdd_pract1_trial_right_poly
      fillColor = 0,0,0
      lineWidth = 10
      pos = (0.5, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent cdd_pract1_trial_prompt_txt
      letterHeight = 0.06
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Which would you prefer?
      wrapWidth = 1.25
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    TextComponent cdd_pract1_trial_immed_txt
      letterHeight = 0.04
      pos [set every repeat] = cdd_immed_pos1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $str("$"+str(format(cdd_immed_amt1))) + "\n" + "\n" + " TODAY"
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    TextComponent cdd_pract1_trial_or_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = OR
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    TextComponent cdd_pract1_trial_delay_txt
      letterHeight = 0.04
      pos [set every repeat] = cdd_delay_pos1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $str("$"+str(format(cdd_delay_amt1))) + "\n" + "\n" + str(cdd_delay_wait1) + " DAYS"
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    PolygonComponent cdd_pract1_trial_cue
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, 1.0000, -1.0000
      saveStartStop = False
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 2
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    KeyboardComponent cdd_pract1_trial_resp
      allowedKeys = '1', '2'
      correctAns = $cdd_immed_resp1
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine cdd_qp_instr
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    TextComponent cdd_qp_instr_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Delayed Discounting Task *
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    TextComponent cdd_qp_instr_txt
      letterHeight = 0.03
      pos = (0, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        Now that you've practiced, we'll begin the first section of the task. You will have 3 seconds to consider and 2 seconds to respond for each trial. Please make your choice when the green circle appears on the screen.

        It is very important for you to answer each of the following trials.
    TextComponent cdd_qp_instr_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to begin.
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    KeyboardComponent cdd_qp_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cdd_questplus
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    CodeComponent cdd_questplus_JS
      Code Type = JS
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      Begin JS Experiment:
        cdd_immed_pos_qp = [];
        cdd_delay_pos_qp = [];
        cdd_immed_resp_qp = [];
        cdd_msg_qp = "";
        cdd_pos_qp = [[(- 0.5), 0], [0.5, 0]];
        cdd_resp_qp = ["1", "2"];

        arange_round = function(start,end,step=null) {
                    if (step === null)
                        step = 1;
                    var arr = [];
                    if (end > start) {
                        for (var i=start; Math.round(i*10)/10 < end; i+=step) {
                            arr.push(Math.round(i*10)/10);
                        }
                    } else {
                        for (var i=start; Math.round(i*10)/10 > end; i+=step) {
                            arr.push(Math.round(i*10)/10);
                        }
                    }
                    return arr;
                }

        weighted_avg = function(q) {
            var fits = [];
            var weight = 0;
            // q.param_domain, q.posterior
            var i, l;
            l = q.param_domain[0].length;
            while (fits.length < l) {
                fits.push(0);
            }
            for (i = 0; i < q.posterior.length; i++) {
                for (l = 0; l < fits.length; l++) {
                    fits[l] += q.param_domain[i][l] * q.posterior[i];
                }
                weight += q.posterior[i];
            }
            for (l = 0; l < fits.length; l++) {
                fits[l] /= weight;
            }
            return fits;
        }

        // Sqrt(sum(w * (x - wm)^2) / sum(w))
        weighted_sd = function(q) {
            var fits = [];
            var weight = 0;
            var i, l;
            var wm = weighted_avg(q);
            l = q.param_domain[0].length;
            while (fits.length < l) {
                fits.push(0);
            }
            for (i = 0; i < q.posterior.length; i++) {
                for (l = 0; l < fits.length; l++) {
                    fits[l] += q.posterior[i] * Math.pow((q.param_domain[i][l] - wm[l]), 2);
                }
                weight += q.posterior[i];
            }
            for (l = 0; l < fits.length; l++) {
                fits[l] /= weight;
                fits[l] = Math.sqrt(fits[l])
            }
            return fits;
        }

        // delayed discounting
        SV_DD = function(stimulus_values, params) {
            var objective_value = stimulus_values[0];
            var delay_days = stimulus_values[1];
            var value_immed = stimulus_values[2];

            var alpha = params[0]; //#Ss risk aversion parameter
            var kappa = params[1]; //#discount_rate parameter
            var gamma = params[2]; //#curvature shape for decision boundary

            var sv_delay = Math.pow(objective_value, alpha)/(1+kappa*delay_days);
            var sv_immed = Math.pow(value_immed, alpha);
            var prob = 1./(1 + Math.exp(-gamma*(sv_delay-sv_immed)));
            return prob;
        }

        // gains value space
        cdd_value_space = [7, 14, 21, 30, 41, 50, 65];
        cdd_time_reward_space = [5, 10, 30, 60, 90, 150];
        cdd_value_fixed = 5; //previously 10, which is higher than the lowest possible delay amt
        cdd_alpha_space = arange_round(0.0, 3.1, 0.1); //# participant parameter space
        // discount rate
        cdd_kappa_space = [1e-05, 1.2648552168552958e-05, 1.5998587196060572e-05, 2.0235896477251556e-05, 2.559547922699533e-05, 3.237457542817647e-05, 4.094915062380427e-05, 5.1794746792312125e-05, 6.55128556859551e-05, 8.286427728546843e-05, 0.00010481131341546853, 0.00013257113655901095, 0.00016768329368110083, 0.00021209508879201905, 0.0002682695795279727, 0.000339322177189533, 0.00042919342601287783, 0.0005428675439323859, 0.0006866488450042998, 0.000868511373751353, 0.0010985411419875584, 0.0013894954943731374, 0.001757510624854793, 0.0022229964825261957, 0.002811768697974231, 0.0035564803062231283, 0.004498432668969444, 0.005689866029018299, 0.0071968567300115215, 0.009102981779915217, 0.011513953993264481, 0.014563484775012445, 0.018420699693267165, 0.023299518105153717, 0.029470517025518096, 0.037275937203149416, 0.04714866363457394, 0.05963623316594643, 0.07543120063354623, 0.09540954763499944, 0.1206792640639329, 0.15264179671752334, 0.19306977288832497, 0.244205309454865, 0.30888435964774846, 0.3906939937054621, 0.49417133613238384, 0.6250551925273976, 0.7906043210907702, 1.0];
        cdd_gamma_space =  arange_round(0.5, 5.1, 0.5);
        cdd_stim_space = [];
        cdd_i = 0;
        cdd_j = 0;
        for (cdd_i = 0; cdd_i < cdd_value_space.length; cdd_i++) {
            for (cdd_j = 0; cdd_j < cdd_time_reward_space.length; cdd_j++) {
                cdd_stim_space.push([cdd_value_space[cdd_i], cdd_time_reward_space[cdd_j], cdd_value_fixed]);
            }
        }

        // subjective value decision?
        draw_from = function(stimulus_value, params, func){
            var prob = func(stimulus_value, params);
            if (Math.random() < prob)
                return 1;
            else
                return 0;
        }

        cdd_params = [cdd_alpha_space, cdd_kappa_space, cdd_gamma_space];
        cdd_func = SV_DD;
        cdd_contrast_idx;
        cdd_response = true;
        cdd_contrast_idx = parseInt(Math.random() * cdd_stim_space.length);//parseInt(stim_space.length/2);
        cdd_q = new QuestPlus(cdd_stim_space, cdd_params, cdd_func);
      Begin JS Routine:
        my_loop = eval(cdd_questplus_loop_name);
        cdd_idx_qp = random.randint(0, 2); //Math.round(Math.random() * (1- 0) + 0);
        cdd_immed_pos_qp = cdd_pos_qp[cdd_idx_qp];
        cdd_immed_resp_qp = cdd_resp_qp[cdd_idx_qp];

        if ((cdd_idx_qp === 0)) {
            cdd_delay_pos_qp = cdd_pos_qp[1];
        } else {
            cdd_delay_pos_qp = cdd_pos_qp[0];
        }

        packed_qp_trial = cdd_stim_space[cdd_contrast_idx];
        cdd_delay_amt_qp = packed_qp_trial[0];
        cdd_delay_wait_qp = packed_qp_trial[1];
        cdd_immed_amt_qp = packed_qp_trial[2];
      End JS Routine:
        cdd_qp_key = cdd_questplus_trial_resp.keys;
        cdd_qp_immed_key = cdd_questplus_trial_resp.corr;

        cdd_response = !cdd_qp_immed_key;
        cdd_q.update(cdd_contrast_idx, cdd_response); //# update posterior
        cdd_contrast_idx = cdd_q.next_contrast(); //# find next contrast index
        cdd_post_mean = weighted_avg(cdd_q);
        cdd_post_sd = weighted_sd(cdd_q);

        my_loop.addData("cdd_trial_type", "questplus");
        my_loop.addData("cdd_response", cdd_response);
        my_loop.addData("cdd_mean_alpha", cdd_post_mean[0]);
        my_loop.addData("cdd_mean_kappa", cdd_post_mean[1]);
        my_loop.addData("cdd_mean_gamma", cdd_post_mean[2]);
        my_loop.addData("cdd_sd_alpha", cdd_post_sd[0]);
        my_loop.addData("cdd_sd_kappa", cdd_post_sd[1]);
        my_loop.addData("cdd_sd_gamma", cdd_post_sd[2]);
        my_loop.addData("cdd_immed_amt_qp", cdd_immed_amt_qp);
        my_loop.addData("cdd_delay_amt_qp", cdd_delay_amt_qp);
        my_loop.addData("cdd_delay_wait_qp", cdd_delay_wait_qp);
    CodeComponent cdd_questplus_trial_code
      Code Type = Both
      disabled = True
      Begin Experiment:
        cdd_immed_pos_qp = [] #position of immediate amt option
        cdd_immed_resp_qp = [] #which key is immediate amt option
        cdd_msg_qp = ""

        #stimuli positions and respective responses
        cdd_pos_qp = [[-0.5, 0], [0.5, 0]] #left/right screen locations
        cdd_resp_qp = ["1", "2"] #1 = left, 2 = right
      Begin JS Experiment:
        cdd_immed_pos_qp = [];
        cdd_immed_resp_qp = [];
        cdd_msg_qp = "";
        cdd_pos_qp = [[(- 0.5), 0], [0.5, 0]];
        cdd_resp_qp = ["1", "2"];
      Begin JS Routine:
        my_loop = eval(cdd_practice_loop_name);
        cdd_idx_qp = random.randint(0, 1);
        cdd_immed_pos_qp = cdd_pos_qp[cdd_idx_qp];
        cdd_immed_resp_qp = cdd_resp_qp[cdd_idx_qp];
      Begin Routine:
        my_loop = eval(cdd_practice_loop_name)
        cdd_idx_qp = random.randint(0,1) #random selection of position and resp key
        cdd_immed_pos_qp = cdd_pos_qp[cdd_idx_qp]
        cdd_immed_resp_qp = cdd_resp_qp[cdd_idx_qp]
      End JS Routine:
        cdd_qp_key = cdd_questplus_trial_resp.keys;
        cdd_qp_immed_key = cdd_questplus_trial_resp.corr;
        my_loop.addData("cdd_trial_type", "questplus");
      End Routine:
        cdd_qp_key = cdd_questplus_trial_resp.keys #Ss response key
        cdd_qp_immed_key = cdd_questplus_trial_resp.corr #1 when immediate amt is chosen
        my_loop.addData("cdd_trial_type", "questplus")
    PolygonComponent cdd_questplus_trial_left_poly
      fillColor = 0,0,0
      lineWidth = 10
      pos = (-0.5, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent cdd_questplus_trial_right_poly
      fillColor = 0,0,0
      lineWidth = 10
      pos = (0.5, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent cdd_questplus_trial_prompt_txt
      letterHeight = 0.06
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Which would you prefer?
      wrapWidth = 1.25
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    TextComponent cdd_questplus_trial_immed_txt
      letterHeight = 0.04
      pos [set every repeat] = cdd_immed_pos_qp
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $str("$"+str(format(cdd_immed_amt_qp))) + "\n" + "\n" + " TODAY"
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    TextComponent cdd_questplus_trial_or_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = OR
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    TextComponent cdd_questplus_trial_delay_txt
      letterHeight = 0.04
      pos [set every repeat] = cdd_delay_pos_qp
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $str("$"+str(format(cdd_delay_amt_qp))) + "\n" + "\n" + str(cdd_delay_wait_qp) + " DAYS"
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    PolygonComponent GRFX_fix2_2
      fillColor = [0,0,0]
      lineColor = [0,0,0]
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 2
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    PolygonComponent cdd_questplus_trial_cue
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, 1.0000, -1.0000
      saveStartStop = False
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 2
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    KeyboardComponent cdd_questplus_trial_resp
      allowedKeys = '1', '2'
      correctAns = $cdd_immed_resp_qp
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine cdd_questplus_fb
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    CodeComponent cdd_questplus_fb_code
      Code Type = Both
      Begin JS Routine:
        if ((cdd_qp_key === undefined)) {
            cdd_msg_qp = "NO RESPONSE";
        } else {
            if (cdd_qp_immed_key) {
                cdd_msg_qp = "$ NOW";
            } else {
                cdd_msg_qp = "$ LATER";
            }
        }
      Begin Routine:
        if len(cdd_qp_key) == 0: #Ss did not respond
            cdd_msg_qp = "NO RESPONSE"
        elif cdd_qp_immed_key: #Ss chose smaller, immediate option
            cdd_msg_qp = "$ NOW"
        else: #Ss chose larger, delayed option
            cdd_msg_qp = "$ LATER"
    TextComponent cdd_qp_fb_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $cdd_msg_qp
      wrapWidth = 1.25
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  Routine cdd_schedule_gen
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    CodeComponent cdd_schedule_gen_JS
      Code Type = JS
      Begin JS Experiment:
        //# because Pavlovia doesn't auto-convert append or extend to push,
        //#  make the same functions work for any javascript array by affecting the prototype
        Array.prototype.append = Array.prototype.push
        Array.prototype.extend = function(arr){this.push(...arr)};

        //# avoid using the "function name(){}" syntax
        //#  to account for Pavlovia's scope problems.

        range = function(start_stop, post_stop, step=1) {
            //# create a list sequence with a starting point, stopping point, and step size
            //#  the step size is assumed 1 if not provided
            //#  the first value is considered the stopping point if the second value is not given,
            //#   in which case the starting point is assumed to be 0.
            //#  post_stop is the non-inclusive end point.
            var arr = [];
            if (post_stop != undefined) {
                for (var i = start_stop; i < post_stop; i += step) {
                    arr.push(i);
                }
            } else {
                for (var i = 0; i < start_stop; i += step) {
                    arr.push(i);
                }
            }
            return arr;
        }

        arange = function(start_stop, post_stop, step=1, rounding=2) {
            //# same as range(), but with rounding built-in
            //# create a list sequence with a starting point, stopping point, and step size
            //#  the step size is assumed 1 if not provided
            //#  the first value is considered the stopping point if the second value is not given,
            //#   in which case the starting point is assumed to be 0.
            //#  post_stop is the non-inclusive end point.
            var arr = [];
            if (post_stop != undefined) {
                if (post_stop < start_stop) {
                    for (var i = start_stop; i > post_stop; i += step) {
                        arr.push(round(i, rounding))
                    }
                } else {
                    for (var i = start_stop; i < post_stop; i += step) {
                        arr.push(round(i, rounding))
                    }
                }
            } else {
                if (start_stop < 0) {
                    for (var i = 0; i > start_stop; i += step) {
                        arr.push(round(i, rounding))
                    }
                } else {
                    for (var i = 0; i < start_stop; i += step) {
                        arr.push(round(i, rounding))
                    }
                }
            }
            return arr;
        }

        clone = function(arr) {
            //# recursive function to deep copy arrays and dictionaries
            var loops, tmp;
            //# see if it is an array
            //#  check a couple of things to try to avoid objects with these keys
            if (Array.isArray(arr)) {
                loops = arr;
                tmp = [];
            } else {
                loops = Object.keys(arr);
                tmp = {};
            }
            loops.forEach(function(val) {
                var value;
                //# if the looped items are the array, push() to a list
                if (loops === arr) {
                    value = val;
                    if (typeof(value) == "object") {
                        //# if the subelement is another complex object,
                        //#  then clone it as well.
                        tmp.push(clone(value));
                    } else {
                        tmp.push(value);
                    }
                } else { //# if the looped items are the dictionary
                         //#  add them with the key
                    value = arr[val];
                    if (typeof(value) == "object") {
                        //# if the subelement is another complex object,
                        //#  then clone it as well.
                        tmp[val] = clone(value);
                    } else {
                        tmp[val] = value;
                    }
                }
            })
            return tmp;
        }

        sum = function(arr){return arr.reduce((partialSum, a) => partialSum + a, 0)}


        random = {
            //# contains useful random number generation functions
            "random" : function(start_stop=1, post_stop=undefined, count=1) {
                var results = [];
                range(count).forEach(function() {
                    if (post_stop != undefined) {
                        if (post_stop < start_stop) {
                            var tmp = post_stop;
                            post_stop = start_stop;
                            start_stop = tmp;
                        }
                        results.push((start_stop + Math.random() * (post_stop - start_stop)));
                    } else {
                        //# if post_stop is not defined, start_stop is the non-inclusive max value.
                        results.push((Math.random() * start_stop));
                    }
                });
                if (count == 1)
                    return results[0];
                    return results;
            },

            "randint" : function(start_stop, post_stop, count=1) {
                var results = [];
                range(count).forEach(function() {
                    //# Math.random() never gives exactly 1, so it
                    //#  never reaches the provided max value.
                    if (post_stop != undefined) {
                        if (post_stop < start_stop) {
                            var tmp = post_stop;
                            post_stop = start_stop;
                            start_stop = tmp;
                        }
                        results.push(parseInt(start_stop + Math.random() * (post_stop - start_stop)));
                    } else {
                        //# if post_stop is not defined, start_stop is non-inclusive max value
                        results.push(parseInt(Math.random() * start_stop));
                    }
                });
                if (count == 1)
                    return results[0];
                    return results;
            },

            "choice" : function(arr, count=1, with_replacement=true) {
                var results = [];
                if (with_replacement) {
                    range(count).forEach(function() {
                        results.push(arr[random.randint(arr.length)]);
                    });
                } else {
                    //# make shallow copy to choose from.
                    //#  you can always clone returned result if you want unique copies,
                    //#  and it makes no difference for arrays of primitives
                    //#  (like numeric indices or string keys).
                    var tmp = [...arr];
                    range(count).forEach(function() {
                        if (tmp.length == 0)
                            //# refill array
                            tmp = [...arr];
                            results.push(tmp.splice(random.randint(tmp.length), 1));
                    });
                }
                if (count == 1)
                    return results[0];
                    return results;
            }
        }
      Begin JS Routine:
        var valence;
        kappa = cdd_post_mean[1];
        alpha = 1;
        //kappa = 0.5;

        amt_immed_options = [2.0, 5.0, 10.0, 15.0, 18.0, 20.0, 27.0, 30.0, 34.0,
                             35.0, 41.0, 43.0, 44.0, 47.0, 51.0, 62.0, 63.0, 64.0]; // possible immediate $ options
        amt_del_options = [5.0, 10.0, 20.0, 35.0, 50.0, 65.0]; // possible delay $ options

        V_max= 65.0; // maximum pay
        V_min = 2.0; // minimum pay
        max_time = 180; // longest delay
        min_time = 2; // shortest delay

        // parameter to modulate how many intermediate trials we want
        Amp = 1/5.0; // fraction of SVmax to match final time option
        if (kappa < 0.003) {
            Amp = 1/4.0;
        }

        // calculate time options
        num_steps = 5; // number of delay options

        // longest possible delay to sample from to equally sample SVdelta pos and neg
        d0 = (1/Amp - 1) / kappa;
        if (d0 > max_time) {
            d0 = max_time; // ensure 180 days is max limit for peopke with low kappa
        }

        // initialize time_options_1 list with time options we always want
        time_options_1 = [7, 15]

        if (d0 < max_time) {
            num_steps = 3;
            time_options_1.push(...[round(d0 + ((max_time - d0)/2)), max_time]); // ensure longest delays are always included for participant's with high kappa
        }

        // loop through number of time_options (num_steps)
        l = arange_round(0, num_steps+1, 1);
        var i
        for (i = 0; i < l.length; i++) {
            if (i > 0){
                time_options_1.push(round(i * (d0 / num_steps)));
            } else {
                time_options_1.push(min_time);
                }
        }

        time_options = [];
        time_options.push(...time_options_1);

        amt_immed_options = amt_immed_options.sort((a, b) => a < b);
        amt_del_options = amt_del_options.sort((a, b) => a < b);
        time_options = time_options.sort((a, b) => a < b);


        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);


        keys_order = ["category", "cdd_immed_amt", "cdd_delay_amt", "cdd_delay_wait", "delay_SV", "deltaSV", "immed_SV"];
        order_keys = function(dict, keys_order) {
            var ordered_dict;
            ordered_dict = {};
            for (var key, _pj_c = 0, _pj_a = keys_order, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                key = _pj_a[_pj_c];
                if (_pj.in_es6(key, dict)) {
                    ordered_dict[key] = dict[key];
                }
            }
            return ordered_dict;
        }


        flatten = function(list) {
            //#flatten list of lists
            return list.flatten();
        }


        round_to_closest_half = function(number) {
            var rounded_number;
            rounded_number = (Math.round((number * 2))/2);
            return ((rounded_number === 0) ? 0.5 : rounded_number);
        }


        zippy = function(x, y) {
            var zipper;
            zipper = [];
            for (var i = 0, _pj_a = x.length; (i < _pj_a); i += 1) {
                zipper.push({"x": x[i], "y": y[i]});
            }
            return zipper;
        }


        mighty_numeration = function(iterable, start = 0) {
            var n;
            n = start;
            var arr = [];
            for (var elem, _pj_c = 0, _pj_a = iterable, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                elem = _pj_a[_pj_c];
                arr.push([n, elem]);
                n += 1;
            }
            return arr;
        }


        value_repeat = function(value, repetitions) {
            var tmp = [];
            for (var i = 0; i < repetitions; i++) {
                tmp.push(value);
            }
            return tmp;
        }


        add_SV = function(trials, kappa) {
            //# adds SV and delta SV to a trials dictionary
            var delay, sv_del, sv_immed, value, zip_data, zip_data2;
            trials["delay_SV"] = [];
            trials["immed_SV"] = [];
            trials["deltaSV"] = [];
            zip_data = zippy(trials["cdd_delay_amt"], trials["cdd_delay_wait"]);
            for (var data, _pj_c = 0, _pj_a = zip_data, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                data = _pj_a[_pj_c];
                value = data["x"];
                delay = data["y"];
                trials["delay_SV"].push((value**alpha/(1 + (kappa * delay)))); //#Silvia instructed us to assume alpha = 1
                trials["immed_SV"].push((trials["cdd_immed_amt"][_pj_c]**alpha/(1 + (kappa * 0))));
            }
            zip_data2 = zippy(trials["delay_SV"], trials["immed_SV"]);
            for (var data2, _pj_c = 0, _pj_a = zip_data2, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                data2 = _pj_a[_pj_c];
                sv_del = data2["x"];
                sv_immed = data2["y"];
                trials["deltaSV"].push((sv_del - sv_immed));
            }
            return trials;
        }


        get_SE = function(kappa, amt_del_options, time_options) {
            /*Creates trials of subjective equality
            Inputs:
            - kappa
            - amt_del_options: List of delayed amounts
            - time_options: List of delay times
            Output:
            - SE_trials: dictionary containing immediate options with same subjective value as delayed options
            */
            var SE_trials, amt_immed_for_D;
            SE_trials = {"category": [], "cdd_delay_wait": [], "cdd_immed_amt": [], "cdd_delay_amt": []};
            amt_del_options = [5.0, 20.0, 40.0];
            for (var delay, _pj_c = 0, _pj_a = time_options, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                delay = _pj_a[_pj_c];
                amt_immed_for_D = []; //#immediate amount with same SV as delay
                for (var value, _pj_f = 0, _pj_d = amt_del_options, _pj_e = _pj_d.length; (_pj_f < _pj_e); _pj_f += 1) {
                    value = _pj_d[_pj_f];
                    amt_immed_for_D.push(round_to_closest_half((value**alpha/(1 + (kappa * delay)))));
                }
                SE_trials["cdd_immed_amt"].push(...amt_immed_for_D);
                SE_trials["cdd_delay_amt"].push(...amt_del_options);
                SE_trials["cdd_delay_wait"].push(...value_repeat(round(delay), amt_del_options.length));
            }
            SE_trials["category"] = value_repeat("SE_trials", SE_trials["cdd_immed_amt"].length);
            return SE_trials;
        }


        max_neg_delta = function(kappa, amt_immed_options, amt_del_options, time_options) {
            //#Creates trials with max negative delta SV that are not catch trials (Vdel > Vn)
            var SV_diff, iSV_diff, ivl, ivn, min_SV_trials;
            min_SV_trials = {"category": [], "cdd_delay_wait": [], "cdd_immed_amt": [], "cdd_delay_amt": [], "deltaSV": []};
            for (var delay, _pj_c = 0, _pj_a = time_options, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                delay = _pj_a[_pj_c];
                SV_diff = 0;
                ivn = 0;
                ivl = 0;
                for (var vn, _pj_f = 0, _pj_d = amt_immed_options, _pj_e = _pj_d.length; (_pj_f < _pj_e); _pj_f += 1) {
                    vn = _pj_d[_pj_f];
                    for (var vl, _pj_i = 0, _pj_g = amt_del_options, _pj_h = _pj_g.length; (_pj_i < _pj_h); _pj_i += 1) {
                        vl = _pj_g[_pj_i];
                        if ((vl <= vn)) {
                            continue;
                        }
                        iSV_diff = ((vl**alpha / (1 + (kappa * delay))) - vn);
                        if ((iSV_diff < SV_diff)) {
                            SV_diff = iSV_diff;
                            [ivn, ivl] = [vn, vl];
                        }
                    }
                }
                min_SV_trials["category"].push("minSV");
                min_SV_trials["cdd_delay_wait"].push(round(delay));
                min_SV_trials["cdd_immed_amt"].push(ivn);
                min_SV_trials["cdd_delay_amt"].push(ivl);
                min_SV_trials["deltaSV"].push(SV_diff);
            }
            return min_SV_trials;
        }


        SE_trials = get_SE(kappa, amt_del_options, time_options);
        SE_trials = add_SV(SE_trials, kappa);
        min_trials = max_neg_delta(kappa, amt_immed_options, amt_del_options, time_options);

        min_SV_trials = {};
        min_trials_keys = ['category', 'cdd_delay_amt', 'cdd_delay_wait', 'cdd_immed_amt'];
        for (var key, _pj_c = 0, _pj_a = min_trials_keys, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            key = _pj_a[_pj_c];
            min_SV_trials[key] = [];
            min_SV_trials[key].push(...min_trials[key]);
            min_SV_trials[key].push(...min_trials[key]);
        }
        min_SV_trials = add_SV(min_SV_trials, kappa);


        target_SVdiff = function(min_SV_trials, Vmax, Amp) {
            //#Defines target SV_deltas to sample given SV range
            var SV_range_neg, SV_range_pos, min_sv_diff, sv_deltas;
            sv_deltas = [];
            for (var delta_sv, _pj_c = 0, _pj_a = min_SV_trials["deltaSV"], _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                delta_sv = _pj_a[_pj_c];
                sv_deltas.push(delta_sv);
            }
            min_sv_diff = Math.min(...sv_deltas);
            SV_range_pos = [];
            SV_range_neg = [];
            for (var g = 0, _pj_a = Number.parseInt((1/Amp)); (g < _pj_a); g += 1) {
                if ((g !== 0)) {
                    SV_range_pos.push(((Amp * Vmax) * g));
                    SV_range_neg.push(((Amp * min_sv_diff) * g));
                }
            }
            return [SV_range_pos, SV_range_neg];
        }


        tmp = target_SVdiff(min_SV_trials, V_max, Amp);
        target_SV_deltas_pos = tmp[0];
        target_SV_deltas_neg = tmp[1];


        get_int_pos_SV_delta = function(target_SV_deltas, amt_immed_options, time_options, Vmax = V_max, valence = "pos") {
            var Vdel, Vimm, category, category_value, delta_sv, index, max_sv_trials, valence;
            max_sv_trials = {"category": [], "cdd_delay_wait": [], "cdd_immed_amt": [], "cdd_delay_amt": []};
            Vimm = Math.min(...amt_immed_options);
            category = "Int+";
            if ((valence === "neg")) {
                Vimm = 10.0;
                category = "Int-";
            }
            for (var tmp, _pj_c = 0, _pj_a = mighty_numeration(target_SV_deltas, 1), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                tmp = _pj_a[_pj_c];
                index = tmp[0];
                delta_sv = tmp[1];
                category_value = index;
                for (var delay, _pj_f = 0, _pj_d = time_options, _pj_e = _pj_d.length; (_pj_f < _pj_e); _pj_f += 1) {
                    delay = _pj_d[_pj_f];
                    Vdel = [round_to_closest_half(((delta_sv + Vimm)**(1/alpha) * (1 + (kappa * delay))))];
                    for (var v, _pj_i = 0, _pj_g = Vdel, _pj_h = _pj_g.length; (_pj_i < _pj_h); _pj_i += 1) {
                        v = _pj_g[_pj_i];
                        if ((v <= Vmax)) {
                            max_sv_trials["cdd_delay_amt"].push(v);
                            max_sv_trials["cdd_delay_wait"].push(round(delay));
                            max_sv_trials["cdd_immed_amt"].push(Vimm);
                            max_sv_trials["category"].push((category + category_value.toString()));
                        }
                    }
                }
            }
            return max_sv_trials;
        }


        Int_pos = get_int_pos_SV_delta(target_SV_deltas_pos, amt_immed_options, time_options);
        Int_pos = add_SV(Int_pos, kappa);


        get_int_neg_SV_delta = function(target_SV_deltas, amt_immed_options, time_options, Vmax, d0 = 180, valence = "pos") {
            var Vdel, Vimm, category, category_value, delta_sv, index, max_sv_trials, valence;
            max_sv_trials = {"category": [], "cdd_delay_wait": [], "cdd_immed_amt": [], "cdd_delay_amt": []};
            Vimm = Math.max(...amt_immed_options);
            category = "Int+";
            if ((valence === "neg")) {
                Vdel = 65.0;
                category = "Int-";
            }
            for (var tmp, _pj_c = 0, _pj_a = mighty_numeration(target_SV_deltas, 1), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                tmp = _pj_a[_pj_c];
                index = tmp[0];
                delta_sv = tmp[1];
                category_value = index;
                for (var delay, _pj_f = 0, _pj_d = time_options, _pj_e = _pj_d.length; (_pj_f < _pj_e); _pj_f += 1) {
                    delay = _pj_d[_pj_f];
                    if ((delay > d0)) {
                        continue;
                    }
                    Vimm = round_to_closest_half(((Vdel**alpha / (1 + (kappa * delay))) - delta_sv));
                    if ((Vimm > Vdel)) {
                        continue;
                    }
                    max_sv_trials["cdd_delay_amt"].push(Vdel);
                    max_sv_trials["cdd_delay_wait"].push(round(delay));
                    max_sv_trials["cdd_immed_amt"].push(Vimm);
                    max_sv_trials["category"].push((category + category_value.toString()));
                }
            }
            return max_sv_trials;
        }


        Int_neg = get_int_neg_SV_delta(target_SV_deltas_neg, amt_immed_options, time_options, V_max, d0 = d0, valence = "neg");
        Int_neg = add_SV(Int_neg, kappa);


        array_of_repetitions = function(value, repetitions) {
            var tmp = [];
            for (var i = 0; i < repetitions; i++) {
                tmp.push(value);
            }
            return tmp;
        }


        get_Max_SVdelta = function(time_options, Vmax = V_max, Vmin = V_min) {
            //Creates trials with max positive delta by assigning largest amount we can pay to delay and least amount to immediate
            var Max_SVdelta;
            Max_SVdelta = {"category": ["MaxSV"], "cdd_delay_wait": [2], "cdd_immed_amt": [2.0], "cdd_delay_amt": [65.0]};
            Max_SVdelta["category"].push(...array_of_repetitions("MaxSV", time_options.length));
            Max_SVdelta["cdd_delay_amt"].push(...array_of_repetitions(Vmax, time_options.length));
            Max_SVdelta["cdd_immed_amt"].push(...array_of_repetitions(Vmin, time_options.length));
            Max_SVdelta["cdd_delay_wait"].push(...time_options);
            return Max_SVdelta;
        }


        Max_trials = get_Max_SVdelta(time_options, V_max, V_min);
        Max_SV_trials = {};
        var max_trials_keys = ['category', 'cdd_delay_amt', 'cdd_delay_wait', 'cdd_immed_amt'];
        for (var key, _pj_c = 0, _pj_a = max_trials_keys, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            key = _pj_a[_pj_c];
            Max_SV_trials[key] = [];
            Max_SV_trials[key].push(...Max_trials[key]);
            Max_SV_trials[key].push(...Max_trials[key]);
        }
        Max_SV_trials = add_SV(Max_SV_trials, kappa);


        dict_merge = function(list_dict) {
            var merged_dict, value;
            merged_dict = [];
            var keys_order = ["category", "cdd_immed_amt", "cdd_immed_wait", "cdd_delay_amt", "cdd_delay_wait", "delay_SV", "deltaSV", "immed_SV"];
            for (var i = 0; i < list_dict.length; i++) {
                var dic = list_dict[i];
                for (var k = 0; k < keys_order.length; k++) {
                    var key = keys_order[k];
                    try {
                        var tmp;
                        if (dic.hasOwnProperty(key)) {
                            tmp = dic[key]
                        }
                        if (!merged_dict.hasOwnProperty(key)) {
                            merged_dict[key] = [];
                        }
                        if (tmp) {
                            merged_dict[key].push(...tmp);
                        }
                    } catch(error) {
                        console.log(error);
                    }
                }
            }
            return merged_dict;
        }


        trials = dict_merge([Max_SV_trials, Int_pos, SE_trials, Int_neg, min_SV_trials]);
        trials["cdd_immed_wait"] = (value_repeat(0, trials["category"].length));
        keys_order = ["category", "cdd_immed_amt", "cdd_immed_wait", "cdd_delay_amt", "cdd_delay_wait", "delay_SV", "deltaSV", "immed_SV"];


        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);


        length_int_trials = function(trials, valence = "+") {
            var category, int_category, length_int_trials;
            category = [...trials["category"]];
            int_category = [];
            length_int_trials = 0;
            for (var c, _pj_c = 0, _pj_a = category, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                c = _pj_a[_pj_c];
                if (_pj.in_es6(valence, c)) {
                    int_category.push(c);
                    length_int_trials += 1;
                }
            }
            return length_int_trials;
        }


        needed_categories = function(trials, valence = "+") {
            var category, int_category;
            category = [...(new Set(trials["category"]))];
            int_category = [];
            for (var c, _pj_c = 0, _pj_a = category, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                c = _pj_a[_pj_c];
                if (_pj.in_es6(valence, c)) {
                    int_category.push(c);
                }
            }
            return int_category;
        }


        grab_additional_trial = function(trials, c, r) {
            var additional_trial, trial_category, trial_idx;
            for (var tmp, _pj_c = 0, _pj_a = mighty_numeration(trials["category"]), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                tmp = _pj_a[_pj_c];
                trial_idx = tmp[0];
                trial_category = tmp[1];
                if ((trial_category === c)) {
                    additional_trial = {"category": [(c.toString() + "_repeat")],
                                        "cdd_immed_amt": [trials["cdd_immed_amt"][trial_idx]],
                                        "cdd_immed_wait": [trials["cdd_immed_wait"][trial_idx]],
                                        "cdd_delay_amt": [trials["cdd_delay_amt"][trial_idx]],
                                        "cdd_delay_wait": [trials["cdd_delay_wait"][trial_idx]],
                                        "delay_SV": [trials["delay_SV"][trial_idx]],
                                        "deltaSV": [trials["deltaSV"][trial_idx]],
                                        "immed_SV": [trials["immed_SV"][trial_idx]]};
                    r = (r - 1);
                    if ((r > 0)) {
                        continue;
                    }
                    return additional_trial;
                }
            }
        }


        add_trials = function(trials, trials_needed, valence = "+") {
            var additional_trial, int_category, nb_repeats;
            int_category = needed_categories(trials, valence);
            nb_repeats = 1;
            if ((int_category.length < trials_needed)) {
                nb_repeats = Number.parseInt((trials_needed / int_category.length));
            }
            for (var r = 0, _pj_a = nb_repeats; (r < _pj_a); r += 1) {
                for (var c, _pj_d = 0, _pj_b = int_category, _pj_c = _pj_b.length; (_pj_d < _pj_c); _pj_d += 1) {
                    c = _pj_b[_pj_d];
                    if ((trials_needed === 0)) {
                        return trials;
                    }
                    additional_trial = grab_additional_trial(trials, c, r);
                    if ((additional_trial === null)) {
                        additional_trial = grab_additional_trial(trials, c, 1);
                    }
                    trials = dict_merge([trials, additional_trial]);
                    trials_needed = (trials_needed - 1);
                }
            }
            return trials;
        }


        standard_trial_number = function(trials, desired_trials) {
            var int_diff, length_neg, length_pos, trials_gap, trials_needed, trials_needed_neg, trials_needed_pos;
            trials_needed = (desired_trials - trials["category"].length);
            length_pos = length_int_trials(trials, valence = "+");
            length_neg = length_int_trials(trials, valence = "-");
            int_diff = (length_pos - length_neg);
            if ((Math.abs(int_diff) < trials_needed)) {
                trials_gap = (trials_needed - Math.abs(int_diff));
                if ((int_diff < 0)) {
                    trials_needed_pos = (trials_gap + ((trials_needed - trials_gap)/2));
                    trials = add_trials(trials, trials_needed_pos, valence = "+");
                    trials_needed_neg = ((trials_needed - trials_gap)/2);
                    trials = add_trials(trials, trials_needed_neg, valence = "-");
                } else {
                    trials_needed_neg = (trials_gap + ((trials_needed - trials_gap)/2));
                    trials = add_trials(trials, trials_needed_neg, valence = "-");
                    trials_needed_pos = ((trials_needed - trials_gap)/2);
                    trials = add_trials(trials, trials_needed_pos, valence = "+");
                }
            } else {
                if ((int_diff > 0)) {
                    trials = add_trials(trials, trials_needed, valence = "-");
                } else {
                    trials = add_trials(trials, trials_needed, valence = "+");
                }
            }
            return trials;
        }


        cdd_desired_trials = 100;
        trials = standard_trial_number(trials, cdd_desired_trials);
        repeated_trials = random.choice(range(trials["category"].length), cdd_desired_trials - trials["category"].length); //indices for adding repeated trials
        if (!Array.isArray(repeated_trials)) {
            repeated_trials = [repeated_trials];
        }
        tmp_trials = {};
        Object.keys(trials).forEach(function(key){
            tmp_trials[key] = [];
        });
        repeated_trials.forEach(function(rp_idx){
            Object.keys(trials).forEach(function(key){
            tmp_trials[key].push(trials[key][rp_idx]);
        });


            });
        cdd_trials_dict = dict_merge([trials, tmp_trials]);
  Routine cdd_pract2_instr
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    TextComponent cdd_pract2_intr_name_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.03
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Delay Discounting Task *
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    TextComponent cdd_pract2_instr_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        In this second section, you will now be asked to provide a confidence rating after your choice.

        When the green circle appears, indicate your decision by pressing 1 for the left option and 2 for the right option. Next, you will rate your choice confidence. Please be sure to answer both the task and confidence questions!

        Let's practice!
    TextComponent cdd_pract_instr_space_txt_2
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent cdd_pract_instr_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cdd_pract2_trial
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    CodeComponent cdd_pract2_trial_code
      Code Type = JS
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      Begin JS Experiment:
        cdd_immed_pos2 = [];
        cdd_delay_pos2 = [];
        cdd_immed_resp2 = [];
        cdd_msg2 = "";
        cdd_pos2 = [[(- 0.5), 0], [0.5, 0]];
        cdd_resp2 = ["1", "2"];
      Begin JS Routine:
        my_loop = eval(cdd_practice_loop2_name);
        cdd_idx2 = random.randint(0, 2); //Math.round(Math.random() * (1- 0) + 0);
        cdd_immed_pos2 = cdd_pos2[cdd_idx2];
        cdd_immed_resp2 = cdd_resp2[cdd_idx2];

        if ((cdd_idx2 === 0)) {
            cdd_delay_pos2 = cdd_pos2[1];
        } else {
            cdd_delay_pos2 = cdd_pos2[0];
        }
      End JS Routine:
        cdd_pract2_key = cdd_pract2_trial_resp.keys;
        cdd_pract2_immed_key = cdd_pract2_trial_resp.corr;
        my_loop.addData("cdd_trial_type", "practice2");
    PolygonComponent cdd_pract2_trial_left_poly
      fillColor = 0,0,0
      lineWidth = 10
      pos = (-0.5, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent cdd_pract2_trial_right_poly
      fillColor = 0,0,0
      lineWidth = 10
      pos = (0.5, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent cdd_pract2_trial_prompt_txt
      letterHeight = 0.06
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Which would you prefer?
      wrapWidth = 1.25
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    TextComponent cdd_pract2_trial_immed_txt
      letterHeight = 0.04
      pos [set every repeat] = cdd_immed_pos2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $str("$"+str(format(cdd_immed_amt2))) + "\n" + "\n" + " TODAY"
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    TextComponent cdd_pract2_trial_or_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = OR
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    TextComponent cdd_pract2_trial_delay_txt
      letterHeight = 0.04
      pos [set every repeat] = cdd_delay_pos2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $str("$"+str(format(cdd_delay_amt2))) + "\n" + "\n" + str(cdd_delay_wait2) + " DAYS"
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    PolygonComponent GRFX_fix3_2
      fillColor = [0,0,0]
      lineColor = [0,0,0]
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 2
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    PolygonComponent cdd_pract2_trial_cue
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, 1.0000, -1.0000
      saveStartStop = False
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 2
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    KeyboardComponent cdd_pract2_trial_resp
      allowedKeys = '1', '2'
      correctAns = $cdd_immed_resp2
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine cdd_pract2_feedback
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    CodeComponent cdd_pract2_fb_py
      Code Type = Both
      Begin JS Routine:
        if ((cdd_pract2_key === undefined)) {
            cdd_msg2 = "NO RESPONSE";
        } else {
            if (cdd_pract2_immed_key) {
                cdd_msg2 = "$ NOW";
            } else {
                cdd_msg2 = "$ LATER";
            }
        }
      Begin Routine:
        if len(cdd_pract2_key) == 0: #Ss did not respond
            cdd_msg2 = "NO RESPONSE"
        elif cdd_pract2_immed_key: #Ss chose smaller, immediate option
            cdd_msg2 = "$ NOW"
        else: #Ss chose larger, delayed option
            cdd_msg2 = "$ LATER"
    TextComponent cdd_pract2_fb_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $cdd_msg2
      wrapWidth = 1.25
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  Routine cdd_pract2_conf
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    CodeComponent cdd_pract2_conf_py
      Code Type = JS
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      Begin JS Routine:
        if ((cdd_pract2_key === undefined)) {
            continueRoutine = false;
        }
        conf1_color = [0, 0, 0];
        conf2_color = [0, 0, 0];
        conf3_color = [0, 0, 0];
        conf4_color = [0, 0, 0];
      Each JS Frame:
        cdd_pract2_conf_key = cdd_pract2_conf_resp.keys;
        if (!(cdd_pract2_conf_key === undefined) && (cdd_pract2_conf_key.length === 1)) {
            if ((cdd_pract2_conf_key === "1")) {
                conf1_color = "darkgray";
                conf2_color = [0, 0, 0];
                conf3_color = [0, 0, 0];
                conf4_color = [0, 0, 0];
            } else {
                if ((cdd_pract2_conf_key === "2")) {
                    conf1_color = [0, 0, 0];
                    conf2_color = "darkgray";
                    conf3_color = [0, 0, 0];
                    conf4_color = [0, 0, 0];
                } else {
                    if ((cdd_pract2_conf_key === "3")) {
                        conf1_color = [0, 0, 0];
                        conf2_color = [0, 0, 0];
                        conf3_color = "darkgray";
                        conf4_color = [0, 0, 0];
                    } else {
                        if ((cdd_pract2_conf_key === "4")) {
                            conf1_color = [0, 0, 0];
                            conf2_color = [0, 0, 0];
                            conf3_color = [0, 0, 0];
                            conf4_color = "darkgray";
                        }
                    }
                }
            }
        }
      End JS Routine:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        if (!(cdd_pract2_conf_key == undefined) && (cdd_pract2_conf_key.length === 1)) {
            if ((Array.isArray(cdd_pract2_conf_key))) {
                if (_pj.in_es6(cdd_pract2_conf_key.slice((- 1))[0], ["1", "2", "3", "4"])) {
                    cdd_conf_resps.push(cdd_pract2_conf_key);
                }
            } else {
                if (_pj.in_es6(cdd_pract2_conf_key, ["1", "2", "3", "4"])) {
                    cdd_conf_resps.push(cdd_pract2_conf_key);
                }
            }
        }
        conf1_color = [0, 0, 0];
        conf2_color = [0, 0, 0];
        conf3_color = [0, 0, 0];
        conf4_color = [0, 0, 0];

        cdd_conf1.setFillColor(new util.Color(conf1_color), false);
        cdd_conf2.setFillColor(new util.Color(conf2_color), false);
        cdd_conf3.setFillColor(new util.Color(conf3_color), false);
        cdd_conf4.setFillColor(new util.Color(conf4_color), false);
    TextComponent cdd_pract2_conf_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = How confident are you in your choice?
      wrapWidth = 1.25
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    PolygonComponent cdd_pract2_conf1
      fillColor [set every frame] = $conf1_color
      lineWidth = 10
      pos = (-0.6, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent cdd_pract2_conf1_txt
      letterHeight = 0.04
      pos = (-0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Not at all
        confident

        1
    PolygonComponent cdd_pract2_conf2
      fillColor [set every frame] = $conf2_color
      lineWidth = 10
      pos = (-0.2, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent cdd_pract2_conf2_txt
      letterHeight = 0.04
      pos = (-0.2, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Less
        confident

        2
    PolygonComponent cdd_pract2_conf3
      fillColor [set every frame] = $conf3_color
      lineWidth = 10
      pos = (0.2, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent cdd_pract2_conf3_txt
      letterHeight = 0.04
      pos = (0.2, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Somewhat
        confident

        3
    PolygonComponent cdd_pract2_conf4
      fillColor [set every frame] = $conf4_color
      lineWidth = 10
      pos = (0.6, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent cdd_pract2_conf4_txt
      letterHeight = 0.04
      pos = (0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Very
        confident

        4
    KeyboardComponent cdd_pract2_conf_resp
      allowedKeys = '1', '2', '3', '4'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine cdd_pract2_iti1
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    CodeComponent cdd_pract2_iti1_code
      Code Type = JS
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      Begin JS Routine:
        if (!(cdd_pract2_trials1.thisTrialN == undefined) && (cdd_pract2_trials1.thisTrialN === 2)) {
            continueRoutine = false;
        }
    PolygonComponent cdd_pract2_iti1_poly
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine cdd_pract2_iti2
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    CodeComponent cdd_pract2_iti2_code
      Code Type = JS
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      Begin JS Routine:
        if (!(cdd_pract2_trials2.thisTrialN == undefined) && (cdd_pract2_trials2.thisTrialN === 2)) {
            continueRoutine = false;
        }
    PolygonComponent cdd_pract2_iti2_poly
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine cdd_pract1_instr
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    PolygonComponent cdd_pract1_instr_left_poly
      fillColor = 0, 0, 0
      lineWidth = 10
      pos = (-0.5, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    PolygonComponent cdd_pract1_instr_right_poly
      fillColor = 0, 0, 0
      lineWidth = 10
      pos = (0.5, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent cdd_pract1_instr_txt
      letterHeight = 0.05
      pos = (0, 0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        *EXAMPLE TRIAL*

        Which would you prefer?








        Let's practice!
    TextComponent cdd_pract1_instr_immed_txt
      letterHeight = 0.04
      pos = (0.5, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        \$10

        TODAY
    TextComponent cdd_pract1_instr_delay_txt
      letterHeight = 0.04
      pos = (-0.5, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        \$50

        9 DAYS
    TextComponent cdd_pract1_instr_or_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = OR
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    TextComponent cdd_pract1_instr_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent cdd_pract1_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine idm_thanks
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    TextComponent idm_thanks_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Introspection and Decision Making Study *
      wrapWidth = 1.5
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    TextComponent idm_thanks_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.35
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      text:
        Thank you for your decision to participate in the IDM study.
    TextComponent idm_thanks_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent idm_thanks_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine idm_consent1
  Routine idm_consent2
  Routine idm_consent3
  Routine idm_consent4
  Routine idm_consent5
  Routine idm_consent6
  Routine idm_consent7
  Routine idm_consent8
  Routine idm_consent9
  Routine idm_thanks
  Routine idm_warn1
  Routine idm_surv1_intro
  LoopInitiator survey1 loopType="TrialHandler"
    conditionsFile = idm_survey1.xlsx
    loopType = sequential
    nReps = 1
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    Routine idm_surv1
  LoopTerminator survey1
  Routine idm_surv2_intro
  LoopInitiator survey2 loopType="TrialHandler"
    conditionsFile = idm_survey2.xlsx
    loopType = sequential
    nReps = 1
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    Routine idm_surv2
  LoopTerminator survey2
  Routine idm_instr1
  Routine idm_instr2
  Routine idm_warn2
  LoopInitiator should_run1 loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = loop1
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    Routine cpdm_namer1
    Routine cpdm_instr1
    Routine cpdm_instr2
    Routine cpdm_instr3
    Routine cpdm_instr4
    Routine cpdm_warn
    Routine cpdm_pract_instr
    Routine cpdm_init_fix
    LoopInitiator cpdm_pract_trials1 loopType="TrialHandler"
      conditionsFile = cpdm/cpdm_practice.xlsx
      loopType = random
      nReps = 1
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      Routine cpdm_pract_trial
      Routine cpdm_pract_iti1
    LoopTerminator cpdm_pract_trials1
    Routine cpdm_trial_instr
    LoopInitiator condition_runs1 loopType="TrialHandler"
      conditionsFile = cpdm/cpdm_run_type.xlsx
      loopType = random
      nReps = 1
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      Routine cpdm_run_setter
      Routine cpdm_loop_instr
      Routine cpdm_init_fix
      LoopInitiator cpdm_trials1 loopType="TrialHandler"
        conditionsFile = cpdm/cpdm-1contrast.xlsx
        loopType = random
        nReps = 1
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        Routine cpdm_trial
        Routine cpdm_trial_iti1
      LoopTerminator cpdm_trials1
      Routine cpdm_run_break1
      Routine idm_term_check
    LoopTerminator condition_runs1
  LoopTerminator should_run1
  LoopInitiator should_run2 loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = loop2
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    Routine crdm_namer1
    Routine crdm_instr1
    Routine crdm_instr2
    Routine crdm_instr3
    Routine crdm_instr4
    Routine crdm_instr5
    Routine crdm_instr6
    Routine crdm_instr7
    Routine crdm_warn
    Routine crdm_pract1_instr
    Routine crdm_init_fix
    LoopInitiator crdm_pract1_trials1 loopType="TrialHandler"
      conditionsFile = crdm/crdm_practice1.csv
      loopType = random
      nReps = 1
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      Routine crdm_pract1_trial
      Routine crdm_pract1_feedback
    LoopTerminator crdm_pract1_trials1
    Routine crdm_qp_instr
    LoopInitiator crdm_qp_trials1 loopType="TrialHandler"
      conditionsFile = crdm/crdm_questplus_trials.csv
      loopType = random
      nReps = 1
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      Routine crdm_questplus
      Routine crdm_qp_feedback
    LoopTerminator crdm_qp_trials1
    Routine crdm_schedule_gen
    Routine crdm_pract2_instr
    Routine crdm_init_fix
    LoopInitiator crdm_pract2_trials1 loopType="TrialHandler"
      conditionsFile = crdm/crdm_practice2.csv
      loopType = random
      nReps = 1
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      Routine crdm_pract2_trial
      Routine crdm_pract2_feedback
      Routine crdm_pract2_conf
      Routine crdm_pract2_iti1
    LoopTerminator crdm_pract2_trials1
    Routine crdm_trial_instr
    Routine crdm_init_fix
    LoopInitiator crdm_trials1 loopType="TrialHandler"
      conditionsFile = crdm/crdm_gen_trials_idx.csv
      loopType = random
      nReps = 1
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      Routine crdm_trial
      Routine crdm_feedback
      Routine crdm_conf
      Routine crdm_trials_iti1
    LoopTerminator crdm_trials1
    Routine crdm_end
    Routine idm_term_check
  LoopTerminator should_run2
  LoopInitiator should_run3 loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = loop3
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    Routine cdd_namer1
    Routine cdd_instr1
    Routine cdd_instr2
    Routine cdd_instr3
    Routine cdd_warn
    Routine cdd_pract1_instr
    Routine cdd_init_fix
    LoopInitiator cdd_pract1_trials1 loopType="TrialHandler"
      conditionsFile = cdd/cdd_practice1.csv
      loopType = random
      nReps = 1
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      Routine cdd_pract1_trial
      Routine cdd_pract1_feedback
    LoopTerminator cdd_pract1_trials1
    Routine cdd_qp_instr
    LoopInitiator cdd_qp_trials1 loopType="TrialHandler"
      conditionsFile = cdd/cdd_qp_trials.csv
      loopType = random
      nReps = 1
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      Routine cdd_questplus
      Routine cdd_questplus_fb
    LoopTerminator cdd_qp_trials1
    Routine cdd_schedule_gen
    Routine cdd_pract2_instr
    Routine cdd_init_fix
    LoopInitiator cdd_pract2_trials1 loopType="TrialHandler"
      conditionsFile = cdd/cdd_practice2.csv
      loopType = random
      nReps = 1
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      Routine cdd_pract2_trial
      Routine cdd_pract2_feedback
      Routine cdd_pract2_conf
      Routine cdd_pract2_iti1
    LoopTerminator cdd_pract2_trials1
    Routine cdd_trial_instr
    Routine cdd_init_fix
    LoopInitiator cdd_trials1 loopType="TrialHandler"
      conditionsFile = cdd/cdd_gen_trials_idx.csv
      loopType = random
      nReps = 1
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      Routine cdd_trial
      Routine cdd_feedback
      Routine cdd_conf
      Routine cdd_trial_iti1
    LoopTerminator cdd_trials1
    Routine cdd_end
    Routine idm_term_check
  LoopTerminator should_run3
  LoopInitiator should_run4 loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = loop4
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    Routine cpdm_namer2
    Routine cpdm_instr1
    Routine cpdm_instr2
    Routine cpdm_instr3
    Routine cpdm_instr4
    Routine cpdm_warn
    Routine cpdm_pract_instr
    Routine cpdm_init_fix
    LoopInitiator cpdm_pract_trials2 loopType="TrialHandler"
      conditionsFile = cpdm/cpdm_practice.xlsx
      loopType = random
      nReps = 1
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      Routine cpdm_pract_trial
      Routine cpdm_pract_iti2
    LoopTerminator cpdm_pract_trials2
    Routine cpdm_trial_instr
    LoopInitiator condition_runs2 loopType="TrialHandler"
      conditionsFile = cpdm/cpdm_run_type.xlsx
      loopType = random
      nReps = 1
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      Routine cpdm_run_setter
      Routine cpdm_loop_instr
      Routine cpdm_init_fix
      LoopInitiator cpdm_trials2 loopType="TrialHandler"
        conditionsFile = cpdm/cpdm-1contrast.xlsx
        loopType = random
        nReps = 1
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        Routine cpdm_trial
        Routine cpdm_trials_iti2
      LoopTerminator cpdm_trials2
      Routine cpdm_run_break2
      Routine idm_term_check
    LoopTerminator condition_runs2
  LoopTerminator should_run4
  LoopInitiator should_run5 loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = loop5
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    Routine crdm_namer2
    Routine crdm_instr1
    Routine crdm_instr2
    Routine crdm_instr3
    Routine crdm_instr4
    Routine crdm_instr5
    Routine crdm_instr6
    Routine crdm_instr7
    Routine crdm_warn
    Routine crdm_pract1_instr
    Routine crdm_init_fix
    LoopInitiator crdm_pract1_trials2 loopType="TrialHandler"
      conditionsFile = crdm/crdm_practice1.csv
      loopType = random
      nReps = 1
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      Routine crdm_pract1_trial
      Routine crdm_pract1_feedback
    LoopTerminator crdm_pract1_trials2
    Routine crdm_qp_instr
    LoopInitiator crdm_qp_trials2 loopType="TrialHandler"
      conditionsFile = crdm/crdm_questplus_trials.csv
      loopType = random
      nReps = 1
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      Routine crdm_questplus
      Routine crdm_qp_feedback
    LoopTerminator crdm_qp_trials2
    Routine crdm_schedule_gen
    Routine crdm_pract2_instr
    Routine crdm_init_fix
    LoopInitiator crdm_pract2_trials2 loopType="TrialHandler"
      conditionsFile = crdm/crdm_practice2.csv
      loopType = random
      nReps = 1
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      Routine crdm_pract2_trial
      Routine crdm_pract2_feedback
      Routine crdm_pract2_conf
      Routine crdm_pract2_iti2
    LoopTerminator crdm_pract2_trials2
    Routine crdm_trial_instr
    Routine crdm_init_fix
    LoopInitiator crdm_trials2 loopType="TrialHandler"
      conditionsFile = crdm/crdm_gen_trials_idx.csv
      loopType = random
      nReps = 1
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      Routine crdm_trial
      Routine crdm_feedback
      Routine crdm_conf
      Routine crdm_trials_iti2
    LoopTerminator crdm_trials2
    Routine crdm_end
    Routine idm_term_check
  LoopTerminator should_run5
  LoopInitiator should_run6 loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = loop6
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    Routine cdd_namer2
    Routine cdd_instr1
    Routine cdd_instr2
    Routine cdd_instr3
    Routine cdd_warn
    Routine cdd_pract1_instr
    Routine cdd_init_fix
    LoopInitiator cdd_pract1_trials2 loopType="TrialHandler"
      conditionsFile = cdd/cdd_practice1.csv
      loopType = random
      nReps = 1
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      Routine cdd_pract1_trial
      Routine cdd_pract1_feedback
    LoopTerminator cdd_pract1_trials2
    Routine cdd_qp_instr
    LoopInitiator cdd_qp_trials2 loopType="TrialHandler"
      conditionsFile = cdd/cdd_qp_trials.csv
      loopType = random
      nReps = 1
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      Routine cdd_questplus
      Routine cdd_questplus_fb
    LoopTerminator cdd_qp_trials2
    Routine cdd_schedule_gen
    Routine cdd_pract2_instr
    Routine cdd_init_fix
    LoopInitiator cdd_pract2_trials2 loopType="TrialHandler"
      conditionsFile = cdd/cdd_practice2.csv
      loopType = random
      nReps = 1
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      Routine cdd_pract2_trial
      Routine cdd_pract2_feedback
      Routine cdd_pract2_conf
      Routine cdd_pract2_iti2
    LoopTerminator cdd_pract2_trials2
    Routine cdd_trial_instr
    Routine cdd_init_fix
    LoopInitiator cdd_trials2 loopType="TrialHandler"
      conditionsFile = cdd/cdd_gen_trials_idx.csv
      loopType = random
      nReps = 1
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      Routine cdd_trial
      Routine cdd_feedback
      Routine cdd_conf
      Routine cdd_trial_iti2
    LoopTerminator cdd_trials2
    Routine cdd_end
    Routine idm_term_check
  LoopTerminator should_run6
  LoopInitiator should_run7 loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = loop7
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    Routine cpdm_namer3
    Routine cpdm_instr1
    Routine cpdm_instr2
    Routine cpdm_instr3
    Routine cpdm_instr4
    Routine cpdm_warn
    Routine cpdm_pract_instr
    Routine cpdm_init_fix
    LoopInitiator cpdm_pract_trials3 loopType="TrialHandler"
      conditionsFile = cpdm/cpdm_practice.xlsx
      loopType = random
      nReps = 1
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      Routine cpdm_pract_trial
      Routine cpdm_pract_iti3
    LoopTerminator cpdm_pract_trials3
    Routine cpdm_trial_instr
    LoopInitiator condition_runs3 loopType="TrialHandler"
      conditionsFile = cpdm/cpdm_run_type.xlsx
      loopType = random
      nReps = 1
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      Routine cpdm_run_setter
      Routine cpdm_loop_instr
      Routine cpdm_init_fix
      LoopInitiator cpdm_trials3 loopType="TrialHandler"
        conditionsFile = cpdm/cpdm-1contrast.xlsx
        loopType = random
        nReps = 1
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        Routine cpdm_trial
        Routine cpdm_trials_iti3
      LoopTerminator cpdm_trials3
      Routine cpdm_run_break3
      Routine idm_term_check
    LoopTerminator condition_runs3
  LoopTerminator should_run7
  Routine idm_rand_select
  Routine cpdm_bonus
  Routine crdm_bonus
  Routine cdd_bonus
  Routine idm_comp_code
