PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['cpdm_practice.xlsx', 'cpdm_run_type.xlsx', 'cpdm-2contrasts.xlsx', 'cpdm-6contrasts.xlsx']
  Screen = 1
  Units = height
  Use version = 2022.2.3
  Window size (pixels) = [1512, 982]
  color = 0,0,0
  expName = cpdm
  exportHTML = manually
  keyboardBackend = Pyglet
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Routines
  Routine meta_instructions
    CodeComponent meta_instr_code
      Code Type = Py
      Before Experiment:
        earnings = [] #set empty array for Ss trials for possible payout

        import random
    TextComponent meta_instr_txt
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Meta Instructions 
      units = norm
      wrapWidth = 1.5
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    KeyboardComponent meta_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cpdm_init_fix
    PolygonComponent cpdm_init_fix_poly
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine cpdm_trial_instr
    TextComponent cpdm_trial_instr_txt
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        You will now begin the Visual Decision Making Task!

        In the following 4 sections, you will be presented with a series of trials similar to those you just practiced. Here, you will not receive feedback about your performance. The option you select will turn light gray to indicate your response was received.

        For each trial, you have 2 seconds to make your decision.
    TextComponent cpdm_trial_instr_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to begin.
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    KeyboardComponent cpdm_trial_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_conf
    CodeComponent crdm_conf_code
      Code Type = Py
      Begin Routine:
        if len(key_press) == 0: #Ss did not respond
            continueRoutine = False

        conf1_color = [0,0,0] #preset default gray for all four response boxes
        conf2_color = [0,0,0]
        conf3_color = [0,0,0]
        conf4_color = [0,0,0]
      Each Frame:
        key = crdm_conf_resp.keys
        if len(key) == 1: #if resp is received
            if key == "1": #not at all confident
                conf1_color = "darkgray" #change box color to indicate selection
            elif key == "2": #less confident
                conf2_color = "darkgray"
            elif key == "3": #somewhat confident
                conf3_color = "darkgray"
            elif key == "4": #very confident
                conf4_color = "darkgray"
    TextComponent crdm_conf_txt
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = How confident are you in your choice?
      units = norm
      wrapWidth = 1.5
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    PolygonComponent crdm_conf1
      fillColor [set every frame] = $conf1_color
      pos = (-0.6, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      units = norm
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    TextComponent crdm_conf1_txt
      letterHeight = 0.07
      pos = (-0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      units = norm
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      text:
        Not at all
        confident

        1
    PolygonComponent crdm_conf2
      fillColor [set every frame] = $conf2_color
      pos = (-0.2, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      units = norm
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    TextComponent crdm_conf2_txt
      letterHeight = 0.07
      pos = (-0.2, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      units = norm
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      text:
        Less
        confident

        2
    PolygonComponent crdm_conf3
      fillColor [set every frame] = $conf3_color
      pos = (0.2, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      units = norm
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    TextComponent crdm_conf3_txt
      letterHeight = 0.07
      pos = (0.2, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      units = norm
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      text:
        Somewhat
        confident

        3
    PolygonComponent crdm_conf4
      fillColor [set every frame] = $conf4_color
      pos = (0.6, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      units = norm
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    TextComponent crdm_conf4_txt
      letterHeight = 0.07
      pos = (0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      units = norm
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      text:
        Very
        confident

        4
    KeyboardComponent crdm_conf_resp
      allowedKeys = '1', '2', '3', '4'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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  Routine cpdm_end
    TextComponent cpdm_end_txt
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Thank you! You have completed the CPDM portion of the experiment.

        Press SPACE to continue to the next section.
    KeyboardComponent cpdm_end_resp
      allowedKeys = "space"
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cpdm_instructions1
    CodeComponent cpdm_loop_namer_code
      Code Type = Both
      Before Experiment:
        import random
        earnings = []

        exp = []
        money = []
        acc =[]
        conf = []
      Before JS Experiment:
        var acc, conf, earnings, exp, money;
        earnings = [];
        exp = [];
        money = [];
        acc = [];
        conf = [];
      Begin JS Routine:
        practice_loop_name = "cpdm_pract_trials";
        loop_name = "cpdm_trials";
      Begin Routine:
        #provides specific loop names for each of three interations of CPDM
        #to provide flexibility of cpdm_pract_trial and cpdm_trial routines
        practice_loop_name = "cpdm_pract_trials"
        loop_name = "cpdm_trials"
    CodeComponent cpdm_instructions1_JS
      Code Type = JS
      Begin JS Experiment:
        random = {random: function(){return Math.random()},
        randint: function(start, end){return Math.round(Math.random()*(end-start)+start)}
        }
    ImageComponent cpdm_instructions1_img
      image = cpdm_keys.png
      pos = (0, -0.06)
      saveStartStop = False
      size = (0.65, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent cpdm_instructions1_txt
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.35
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      text:
        Welcome to the Visual Decision Making Task!

        You will be presented with a series of oriented patterns across multiple trials. Your job is to decide if the pattern is tilting to the left or right. In your response, you will also indicate how confident you are in your choice.
        There are four possible response combinations:









        For each trial, you will have 2 seconds to respond.
    TextComponent cpdm_instructions1_Qkey_txt
      color = 1.0000, 0.6863, -1.0000
      letterHeight = 0.025
      pos = (-0.3, 0.07)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Press Q for LEFT tilt and HIGH confidence
    TextComponent cpdm_instructions1_Pkey_txt
      color = 1.0000, 0.6863, -1.0000
      letterHeight = 0.025
      pos = (0.3, 0.07)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Press P for RIGHT tilt and HIGH confidence
    TextComponent cpdm_instructions1_Akey_txt
      color = 1.0000, 0.6863, -1.0000
      letterHeight = 0.025
      pos = (-0.3, -0.225)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Press A for LEFT tilt and LOW confidence
    TextComponent cpdm_instructios1_Lkey_txt
      color = 1.0000, 0.6863, -1.0000
      letterHeight = 0.025
      pos = (0.3, -0.225)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Press L for RIGHT tilt and LOW confidence
    TextComponent cpdm_instructions1_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent cpdm_instuctions1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cpdm_instructions2
    TextComponent cpdm_instructions2_txt
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        The answer for each trial you select will determine how much money you could earn if selected for your bonus earnings.

        You will complete 4 blocks of 200 trials. Each block will have a different reward structure depending on accuracy and level of confidence. You will receive information about the montary value of different types of response before each block begins.
    TextComponent cpdm_instructions2_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent cpdm_instructions2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cpdm_practice_instr
    TextComponent cpdm_practice_instr_txt
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        To help you better understand the task, we will now complete a set of practice trials.

        In these practice examples, if you make the correct choice regarding tilt, the box you select will turn green. If you are incorrect, the box you select will turn red. Feedback about performance during the practice trials is to help you understand the task, but will not be given during the actual experiment.

        Finally, please be sure to focus on the white cross when it appears on the screen.
    TextComponent cpdm_pract_instr_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to begin.
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    KeyboardComponent cpdm_practice_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cpdm_run_setter
    CodeComponent cpdm_run_setter_code
      Code Type = Auto->JS
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      Begin Routine:
        #selects contrast schedule depending on run type
        #low volatility
        if "low_vol" in run_dimension:
            #be careful of relative path
            run_schedule = "cpdm-2contrasts.xlsx"
        #high volatility
        else:
            run_schedule = "cpdm-6contrasts.xlsx"

        #flexible response text for high confidence options depending on run type
        if "low_risk" in run_dimension:
            left_resp_txt = "LEFT \n \n HIGH Confidence \n \n $10 or $0"
            right_resp_txt = "RIGHT \n \n HIGH Confidence \n \n $10 or $0"
        else:
            left_resp_txt = "LEFT \n \n HIGH Confidence \n \n $20 or $0"
            right_resp_txt = "RIGHT \n \n HIGH Confidence \n \n $20 or $0"

        #create list of 200 random ITIs
        #iterate through list of ITIs, multiple by number of floats, divide by sum of original list
        #creates random list of ITI value for each trial which sum to 200
        iti_list = [random.random() for i in range(200)]
        s = sum(iti_list)
        iti_list = [i*200/s for i in iti_list]
  Routine cpdm_run_break
    CodeComponent cpdm_run_break_code
      Code Type = Auto->JS
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      Begin Routine:
        #final run
        if condition_runs.thisN == 3:
            run_break_txt = "You have completed all 4 blocks of the Visual Decision Making Task!. \n \n Press SPACE to continue to the randomly selected bonus trial."
        #first three runs
        else:
            run_break_txt = "Please feel free to take a short break. \n \n When you begin the next block, read the possible monetary values of each option carefully as they may have changed. \n \n Press SPACE to begin."
    TextComponent cpdm_run_break_txt
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $run_break_txt
      wrapWidth = 1.25
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    KeyboardComponent cpdm_run_break_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cpdm_trial
    CodeComponent cpdm_trial_code
      Code Type = Both
      Before Experiment:
        #used in variable ITI
        delta_time = 0
      Before JS Experiment:
        delta_time = 0;
      Begin JS Routine:
        my_loop = eval(loop_name);
        stop_timer = null;
        stopped_time = 0;
        correct_resp = 0;
        left_high_color = [0, 0, 0];
        left_low_color = [0, 0, 0];
        right_high_color = [0, 0, 0];
        right_low_color = [0, 0, 0];
        is_clockwise = false;
        if ((gabor_orient > 0.0)) {
            is_clockwise = true;
        } else {
            if ((gabor_orient === 0.0)) {
                rand_num = Math.round(Math.random() + 1);
                if ((rand_num === 1)) {
                    is_clockwise = true;
                } else {
                    is_clockwise = false;
                }
            }
        }
      Begin Routine:
        my_loop = eval(loop_name)
        stop_timer = None
        stopped_time = 0
        correct_resp = 0

        #set default gray for all four response boxes
        left_high_color = [0,0,0]
        left_low_color = [0,0,0]
        right_high_color = [0,0,0]
        right_low_color = [0,0,0]

        is_clockwise = False
        if gabor_orient > 0.0:
            is_clockwise = True
        elif gabor_orient == 0.0:
            rand_num = random.randint(1,2)
            if rand_num == 1:
                is_clockwise = True
            else:
                is_clockwise = False
      Each Frame:
        #checks if resp is received for each trial and which key was pressed
        #depending on which key is pressed, respective box color changes and
        #correct_resp variable is updated if correct (preassigned to 0)
        key = cpdm_trial_resp.keys

        if len(key) == 1:
            if stop_timer == None:
                stop_timer = core.Clock()
            else:
                stopped_time = stop_timer.getTime()
                if stopped_time >= 0.5:
                    continueRoutine = False
            #Left - High Confidence
            if key == "q":
                #correct left resp
                if is_clockwise == False:
                    #indicates selection without performance feedback
                    left_high_color = "darkgray"
                    #indicate correct resp for current trial
                    correct_resp = 1
                #incorrect left resp
                else:
                    left_high_color = "darkgray"
            #Left - Low Confidence
            elif key == "a":
                #correct left resp
                if is_clockwise == False:
                    left_low_color = "darkgray"
                    correct_resp = 1
                else:
                    left_low_color = "darkgray"
            #Right - High Confidence
            elif key == "p":
                #correct right resp
                if is_clockwise == True:
                    right_high_color = "darkgray"
                    correct_resp = 1
                #incorrect right resp
                else:
                    right_high_color = "darkgray"
            #Right - Low Confidence
            elif key == "l":
                #correct right resp
                if is_clockwise == True:
                    right_low_color = "darkgray"
                    correct_resp = 1
                #incorrect right resp
                else:
                    right_low_color = "darkgray"
      Each JS Frame:
        if (!(cpdm_trial_resp.keys === undefined) && cpdm_trial_resp.keys.length == 1) {
            key = cpdm_trial_resp.keys;
            if ((stop_timer === null)) {
                stop_timer = new util.Clock();
            } else {
                stopped_time = stop_timer.getTime();
                if ((stopped_time >= 0.5)) {
                    continueRoutine = false;
                }
            }
            if ((key === "q")) {
                if ((is_clockwise === false)) {
                    left_high_color = "darkgray";
                    correct_resp = 1;
                } else {
                    left_high_color = "darkgray";
                }
            } else {
                if ((key === "a")) {
                    if ((is_clockwise === false)) {
                        left_low_color = "darkgray";
                        correct_resp = 1;
                    } else {
                        left_low_color = "darkgray";
                    }
                } else {
                    if ((key === "p")) {
                        if ((is_clockwise === true)) {
                            right_high_color = "darkgray";
                            correct_resp = 1;
                        } else {
                            right_high_color = "darkgray";
                        }
                    } else {
                        if ((key === "l")) {
                            if ((is_clockwise === true)) {
                                right_low_color = "darkgray";
                                correct_resp = 1;
                            } else {
                                right_low_color = "darkgray";
                            }
                        }
                    }
                }
            }
        }
      End JS Routine:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        my_loop.addData("trial_corr", correct_resp);
        key = cpdm_trial_resp.keys;
        if ((((cpdm_trial_resp.rt) === undefined) || (cpdm_trial_resp.rt >= (2.2 - 0.5)))) {
            delta_time = 0;
        } else {
            delta_time = Math.max(0, (2.2 - (cpdm_trial_resp.rt + stopped_time)));
        }
        if (_pj.in_es6("low_risk", run_dimension)) {
            if ((key === "q")) {
                if ((is_clockwise === false)) {
                    my_loop.addData("earnings", 10);
                    if ((gabor_orient !== 0.0)) {
                        earnings.push(["CPDM", 10, "CORRECT", "HIGH"]);
                    }
                } else {
                    my_loop.addData("earnings", 0);
                    if ((gabor_orient !== 0.0)) {
                        earnings.push(["CPDM", 0, "INCORRECT", "HIGH"]);
                    }
                }
            } else {
                if ((key === "a")) {
                    if ((is_clockwise === false)) {
                        my_loop.addData("earnings", 8);
                        if ((gabor_orient !== 0.0)) {
                            earnings.push(["CPDM", 8, "CORRECT", "LOW"]);
                        }
                    } else {
                        my_loop.addData("earnings", 2);
                        if ((gabor_orient !== 0.0)) {
                            earnings.push(["CPDM", 2, "INCORRECT", "LOW"]);
                        }
                    }
                } else {
                    if ((key === "p")) {
                        if ((is_clockwise === true)) {
                            my_loop.addData("earnings", 10);
                            if ((gabor_orient !== 0.0)) {
                                earnings.push(["CPDM", 10, "CORRECT", "HIGH"]);
                            }
                        } else {
                            my_loop.addData("earnings", 0);
                            if ((gabor_orient !== 0.0)) {
                                earnings.push(["CPDM", 0, "INCORRECT", "HIGH"]);
                            }
                        }
                    } else {
                        if ((key === "l")) {
                            if ((is_clockwise === true)) {
                                my_loop.addData("earnings", 8);
                                if ((gabor_orient !== 0.0)) {
                                    earnings.push(["CPDM", 8, "CORRECT", "LOW"]);
                                }
                            } else {
                                my_loop.addData("earnings", 2);
                                if ((gabor_orient !== 0.0)) {
                                    earnings.push(["CPDM", 2, "INCORRECT", "LOW"]);
                                }
                            }
                        }
                    }
                }
            }
        } else {
            if ((key === "q")) {
                if ((is_clockwise === false)) {
                    my_loop.addData("earnings", 20);
                    if ((gabor_orient !== 0.0)) {
                        earnings.push(["CPDM", 20, "CORRECT", "HIGH"]);
                    }
                } else {
                    my_loop.addData("earnings", 0);
                    if ((gabor_orient !== 0.0)) {
                        earnings.push(["CPDM", 0, "INCORRECT", "HIGH"]);
                    }
                }
            } else {
                if ((key === "a")) {
                    if ((is_clockwise === false)) {
                        my_loop.addData("earnings", 8);
                        if ((gabor_orient !== 0.0)) {
                            earnings.push(["CPDM", 8, "CORRECT", "LOW"]);
                        }
                    } else {
                        my_loop.addData("earnings", 2);
                        if ((gabor_orient !== 0.0)) {
                            earnings.push(["CPDM", 2, "INCORRECT", "LOW"]);
                        }
                    }
                } else {
                    if ((key === "p")) {
                        if ((is_clockwise === true)) {
                            my_loop.addData("earnings", 20);
                            if ((gabor_orient !== 0.0)) {
                                earnings.push(["CPDM", 20, "CORRECT", "HIGH"]);
                            }
                        } else {
                            my_loop.addData("earnings", 0);
                            if ((gabor_orient !== 0.0)) {
                                earnings.push(["CPDM", 0, "INCORRECT", "HIGH"]);
                            }
                        }
                    } else {
                        if ((key === "l")) {
                            if ((is_clockwise === true)) {
                                my_loop.addData("earnings", 8);
                                if ((gabor_orient !== 0.0)) {
                                    earnings.push(["CPDM", 8, "CORRECT", "LOW"]);
                                }
                            } else {
                                my_loop.addData("earnings", 2);
                                if ((gabor_orient !== 0.0)) {
                                    earnings.push(["CPDM", 2, "INCORRECT", "LOW"]);
                                }
                            }
                        }
                    }
                }
            }
        }

        left_high_color = [0, 0, 0];
        left_low_color = [0, 0, 0];
        right_high_color = [0, 0, 0];
        right_low_color = [0, 0, 0];

        cpdm_trial_left_high_poly.setFillColor(new util.Color(left_high_color), false);
        cpdm_trial_left_low_poly.setFillColor(new util.Color(left_low_color), false);
        cpdm_trial_right_high_poly.setFillColor(new util.Color(right_high_color), false);
        cpdm_trial_right_low_poly.setFillColor(new util.Color(right_low_color), false);
      End Routine:
        my_loop.addData("trial_corr", correct_resp)
        key = cpdm_trial_resp.keys

        if type(cpdm_trial_resp.rt) is list or cpdm_trial_resp.rt >= 2.2 - 0.5:
            delta_time = 0
        else:
            delta_time = max(0, 2.2 - (cpdm_trial_resp.rt + stopped_time))

        #low risk possible payouts
        if "low_risk" in run_dimension:
            if key == "q":
                #LEFT - HIGH correct
                if is_clockwise == False:
                    my_loop.addData("earnings", 10)
                    #correct response is not random
                    if gabor_orient != 0.0:
                        earnings.append(("CPDM", 10, "CORRECT", "HIGH"))
                #LEFT - HIGH incorrect
                else:
                    my_loop.addData("earnings", 0)
                    if gabor_orient != 0.0:
                        earnings.append(("CPDM", 0, "INCORRECT", "HIGH"))
            elif key == "a":
                #LEFT - LOW correct
                if is_clockwise == False:
                    my_loop.addData("earnings", 8)
                    if gabor_orient != 0.0:
                        earnings.append(("CPDM", 8, "CORRECT", "LOW"))
                #LEFT - LOW incorrect
                else:
                    my_loop.addData("earnings", 2)
                    if gabor_orient != 0.0:
                        earnings.append(("CPDM", 2, "INCORRECT", "LOW"))
            elif key == "p":
                #RIGHT - HIGH correct
                if is_clockwise == True:
                    my_loop.addData("earnings", 10)
                    if gabor_orient != 0.0:
                        earnings.append(("CPDM", 10, "CORRECT", "HIGH"))
                #RIGHT - HIGH incorrect
                else:
                    my_loop.addData("earnings", 0)
                    if gabor_orient != 0.0:
                        earnings.append(("CPDM", 0, "INCORRECT", "HIGH"))
            elif key == "l":
                #RIGHT - LOW correct
                if is_clockwise == True:
                    my_loop.addData("earnings", 8)
                    if gabor_orient != 0.0:
                        earnings.append(("CPDM", 8, "CORRECT", "LOW"))
                #RIGHT - LOW incorrect
                else:
                    my_loop.addData("earnings", 2)
                    if gabor_orient != 0.0:
                        earnings.append(("CPDM", 2, "INCORRECT", "LOW"))
        #high risk possible payouts
        else:
            if key == "q":
                #LEFT - HIGH correct
                if is_clockwise == False:
                    my_loop.addData("earnings", 20)
                    if gabor_orient != 0.0:
                        earnings.append(("CPDM", 20, "CORRECT", "HIGH"))
                #LEFT - HIGH incorrect
                else:
                    my_loop.addData("earnings", 0)
                    if gabor_orient != 0.0:
                        earnings.append(("CPDM", 0, "INCORRECT", "HIGH"))
            elif key == "a":
                #LEFT - LOW correct
                if is_clockwise == False:
                    my_loop.addData("earnings", 8)
                    if gabor_orient != 0.0:
                        earnings.append(("CPDM", 8, "CORRECT", "LOW"))
                #Left - LOW incorrect
                else:
                    my_loop.addData("earnings", 2)
                    if gabor_orient != 0.0:
                        earnings.append(("CPDM", 2, "INCORRECT", "LOW"))
            elif key == "p":
                #RIGHT - HIGH correct
                if is_clockwise == True:
                    my_loop.addData("earnings", 20)
                    if gabor_orient != 0.0:
                        earnings.append(("CPDM", 20, "CORRECT", "HIGH"))
                #RIGHT - HIGH incorrect
                else:
                    my_loop.addData("earnings", 0)
                    if gabor_orient != 0.0:
                        earnings.append(("CPDM", 0, "INCORRECT", "HIGH"))
            elif key == "l":
                #RIGHT - LOW correct
                if is_clockwise == True:
                    my_loop.addData("earnings", 8)
                    if gabor_orient != 0.0:
                        earnings.append(("CPDM", 8, "CORRECT", "LOW"))
                #RIGHT - LOW incorrect
                else:
                    my_loop.addData("earnings", 2)
                    if gabor_orient != 0.0:
                        earnings.append(("CPDM", 2, "INCORRECT", "LOW"))
    GratingComponent cpdm_trial_gabor
      contrast [set every repeat] = gabor_contrast
      mask = gauss
      ori [set every repeat] = gabor_orient
      sf = 6
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      tex = sin
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    PolygonComponent cpdm_trial_left_high_poly
      fillColor [set every frame] = $left_high_color
      lineWidth = 15
      pos = (-0.45, 0.25)
      saveStartStop = False
      shape = rectangle
      size = (0.35, 0.35)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2.2
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    PolygonComponent cpdm_trial_right_high_poly
      fillColor [set every frame] = $right_high_color
      lineWidth = 15
      pos = (0.45, 0.25)
      saveStartStop = False
      shape = rectangle
      size = (0.35, 0.35)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2.2
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    PolygonComponent cpdm_trial_left_low_poly
      fillColor [set every frame] = $left_low_color
      lineWidth = 15
      pos = (-0.45, -0.25)
      saveStartStop = False
      shape = rectangle
      size = (0.35, 0.35)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2.2
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    PolygonComponent cpdm_trial_right_low_poly
      fillColor [set every frame] = $right_low_color
      lineWidth = 15
      pos = (0.45, -0.25)
      saveStartStop = False
      shape = rectangle
      size = (0.35, 0.35)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2.2
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    TextComponent cpdm_trial_left_high_txt
      letterHeight = 0.035
      pos = (-0.45, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2.2
      text [set every repeat] = $left_resp_txt
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    TextComponent cpdm_trial_right_high_txt
      letterHeight = 0.035
      pos = (0.45, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2.2
      text [set every repeat] = $right_resp_txt
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    TextComponent cpdm_trial_left_low_txt
      letterHeight = 0.035
      pos = (-0.45, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2.2
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      text:
        LEFT

        LOW Confidence

        \$8 or \$6
    TextComponent cpdm_trial_right_low_txt
      letterHeight = 0.035
      pos = (0.45, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2.2
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      text:
        RIGHT

        LOW Confidence

        \$8 or \$6
    KeyboardComponent cpdm_trial_resp
      allowedKeys = 'q', 'a', 'p', 'l'
      forceEndRoutine = False
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2.2
      store = first key
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  Routine cpdm_pract_trial
    CodeComponent cpdm_pract_trial_code
      Code Type = Both
      Begin Experiment:
        #set default gray for all four response boxes
        left_high_color = [0,0,0]
        left_low_color = [0,0,0]
        right_high_color = [0,0,0]
        right_low_color = [0,0,0]
      Begin JS Experiment:
        left_high_color = [0, 0, 0];
        left_low_color = [0, 0, 0];
        right_high_color = [0, 0, 0];
        right_low_color = [0, 0, 0];

        rand_num = 0;
      Begin JS Routine:
        my_loop = eval(practice_loop_name);
        correct_resp = 0;
        left_high_color = [0, 0, 0];
        left_low_color = [0, 0, 0];
        right_high_color = [0, 0, 0];
        right_low_color = [0, 0, 0];
        is_clockwise = false;
        if ((gabor_orient > 0.0)) {
            is_clockwise = true;
        } else {
            if ((gabor_orient === 0.0)) {
                rand_num = Math.round(Math.random() + 1) ;
                if ((rand_num === 1)) {
                    is_clockwise = true;
                } else {
                    is_clockwise = false;
                }
            }
        }
      Begin Routine:
        my_loop = eval(practice_loop_name)
        correct_resp = 0

        #set default gray for all four response boxes
        left_high_color = [0,0,0]
        left_low_color = [0,0,0]
        right_high_color = [0,0,0]
        right_low_color = [0,0,0]

        is_clockwise = False
        if gabor_orient > 0.0:
            is_clockwise = True
        elif gabor_orient == 0.0:
            rand_num = random.randint(1,2)
            if rand_num == 1:
                is_clockwise = True
            else:
                is_clockwise = False
      Each Frame:
        #each trial and resp
        #checks which key Ss pressed and changed the color of the selected box
        #depending on correctness of selection
        #also changes correct_resp variable which is recorded in End Routine

        #resp is received
        if len(cpdm_pract_trial_resp.keys) == 1:
            key = cpdm_pract_trial_resp.keys
            #Ss selected Left-High
            if key == "q":
                #and correct resp is Left
                if is_clockwise == False:
                    #change upper-left box to green
                    left_high_color = "green"
                    #set correct resp to 1
                    correct_resp = 1
                #incorrect left resp
                else:
                    left_high_color = "red"
            elif key == "a":
                #correct left resp
                if is_clockwise == False:
                    left_low_color = "green"
                    correct_resp = 1
                else:
                    left_low_color = "red"
            elif key == "p":
                #correct right resp
                if is_clockwise == True:
                    right_high_color = "green"
                    correct_resp = 1
                #incorrect right resp
                else:
                    right_high_color = "red"
            elif key == "l":
                #correct right resp
                if is_clockwise == True:
                    right_low_color = "green"
                    correct_resp = 1
                #incorrect right resp
                else:
                    right_low_color = "red"
      Each JS Frame:
        if (!(cpdm_pract_trial_resp.keys === undefined) && cpdm_pract_trial_resp.keys.length == 1) {
            key = cpdm_pract_trial_resp.keys;
            if ((key === "q")) {
                if ((is_clockwise === false)) {
                    left_high_color = "green";
                    correct_resp = 1;
                } else {
                    left_high_color = "red";
                }
            } else {
                if ((key === "a")) {
                    if ((is_clockwise === false)) {
                        left_low_color = "green";
                        correct_resp = 1;
                    } else {
                        left_low_color = "red";
                    }
                } else {
                    if ((key === "p")) {
                        if ((is_clockwise === true)) {
                            right_high_color = "green";
                            correct_resp = 1;
                        } else {
                            right_high_color = "red";
                        }
                    } else {
                        if ((key === "l")) {
                            if ((is_clockwise === true)) {
                                right_low_color = "green";
                                correct_resp = 1;
                            } else {
                                right_low_color = "red";
                            }
                        }
                    }
                }
            }
        }
      End JS Routine:
        my_loop.addData("pract_corr", correct_resp);
        left_high_color = [0, 0, 0];
        left_low_color = [0, 0, 0];
        right_high_color = [0, 0, 0];
        right_low_color = [0, 0, 0];

        cpdm_pract_trial_left_high_poly.setFillColor(new util.Color(left_high_color), false);
        cpdm_pract_trial_left_low_poly.setFillColor(new util.Color(left_low_color), false);
        cpdm_pract_trial_right_high_poly.setFillColor(new util.Color(right_high_color), false);
        cpdm_pract_trial_right_low_poly.setFillColor(new util.Color(right_low_color), false);
      End Routine:
        #create new column in output to save whether Ss response was correct
        # 1 = correct, 0 = incorrect
        my_loop.addData("pract_corr", correct_resp)
    GratingComponent cpdm_pract_trial_gabor
      contrast [set every repeat] = gabor_contrast
      mask = gauss
      ori [set every repeat] = gabor_orient
      saveStartStop = False
      sf = 6
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      tex = sin
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    PolygonComponent cpdm_pract_trial_left_high_poly
      fillColor [set every frame] = $left_high_color
      lineWidth = 15
      pos = (-0.45, 0.25)
      saveStartStop = False
      shape = rectangle
      size = (0.35, 0.35)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2.2
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    PolygonComponent cpdm_pract_trial_right_high_poly
      fillColor [set every frame] = $right_high_color
      lineWidth = 15
      pos = (0.45, 0.25)
      saveStartStop = False
      shape = rectangle
      size = (0.35, 0.35)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2.2
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    PolygonComponent cpdm_pract_trial_left_low_poly
      fillColor [set every frame] = $left_low_color
      lineWidth = 15
      pos = (-0.45, -0.25)
      saveStartStop = False
      shape = rectangle
      size = (0.35, 0.35)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2.2
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    PolygonComponent cpdm_pract_trial_right_low_poly
      fillColor [set every frame] = $right_low_color
      lineWidth = 15
      pos = (0.45, -0.25)
      saveStartStop = False
      shape = rectangle
      size = (0.35, 0.35)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2.2
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    TextComponent cpdm_pract_trial_left_high_txt
      letterHeight = 0.035
      pos = (-0.45, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2.2
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      text:
        LEFT

        HIGH Confidence

        \$10 or \$0
    TextComponent cpdm_pract_trial_right_high_txt
      letterHeight = 0.035
      pos = (0.45, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2.2
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      text:
        RIGHT

        HIGH Confidence

        \$10 or \$0
    TextComponent cpdm_pract_trial_left_low_txt
      letterHeight = 0.035
      pos = (-0.45, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2.2
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      text:
        LEFT

        LOW Confidence

        \$8 or \$6
    TextComponent cpdm_pract_trial_right_low_txt
      letterHeight = 0.035
      pos = (0.45, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2.2
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      text:
        RIGHT

        LOW Confidence

        \$8 or \$6
    KeyboardComponent cpdm_pract_trial_resp
      allowedKeys = 'q', 'a', 'p', 'l'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2.2
      store = first key
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  Routine cpdm_bonus
    CodeComponent cpdm_bonus_code
      Code Type = Auto->JS
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      Begin Routine:
        #indexing example
        #("CPDM", 0, "incorrect", "high")

        #random selection of bonus trial
        idx = int(random.random() * len(earnings))
        exp, money, acc, conf = earnings[idx]
        my_loop.addData("cpdm_bonus_amt", money)
        my_loop.addData("cpdm_bonus_acc", money)
        my_loop.addData("cpdm_bonus_conf", money)

        acc_color = []

        if acc == "CORRECT":
            acc_color = "darkseagreen"
        else:
            acc_color = "salmon"
    TextComponent cpdm_bonus_thanks_txt
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Thank you for participating in the Confidence and Perceptual Decision Making Task!
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    TextComponent cpdm_bonus_earnings_txt
      letterHeight = 0.04
      pos = (0, 0.10)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = In the randomly selected trial you earned
      wrapWidth = 1.25
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    TextComponent cpdm_bonus_amt_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      text [set every repeat] = $str("$"+str(money))
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    TextComponent cpdm_bonus_answer_txt
      letterHeight = 0.04
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text = Your answer was
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    TextComponent cpdm_bonus_acc_txt
      color [set every repeat] = $acc_color
      letterHeight = 0.04
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
      text [set every repeat] = $acc
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    TextComponent cpdm_bonus_and_txt
      letterHeight = 0.04
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = and
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    TextComponent cpdm_bonus_conf_txt
      color = 0.0588, 0.6157, 0.9608
      letterHeight = 0.04
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $conf + " CONFIDENCE"
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    TextComponent cpdm_bonus_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to end.
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    KeyboardComponent cpdm_bonus_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cpdm_loop_instr
    CodeComponent cpdm_loop_instr_code
      Code Type = Auto->JS
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      Begin Experiment:
        loop_spec_instr = ""
        run_counter = 1
      Begin Routine:
        if "low_risk" in run_dimension:
            corr_high_txt = "Correct \n High Confidence \n $10"
        else:
            corr_high_txt = "Correct \n High Confidence \n $20"
      End Routine:
        run_counter += 1
    TextComponent cpdm_loop_instr_code_2
      letterHeight = 0.04
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $"For Block " + str(run_counter) + ", possible monetary outcomes are as follows:"
      wrapWidth = 1.25
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    PolygonComponent cpdm_loop_instr_corr_high_poly
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 15
      pos = (-0.125, 0.125)
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    PolygonComponent cpdm_loop_instr_right_high_poly
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 15
      pos = (0.125, 0.125)
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.25)
      startVal [time (s)] = 0
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    PolygonComponent cpdm_loop_instr_left_low_poly
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 15
      pos = (-0.125, -0.125)
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    PolygonComponent cpdm_loop_instr_right_low_poly
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 15
      pos = (0.125, -0.125)
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent cpdm_loop_instr_corr_high_txt
      letterHeight = 0.03
      pos = (-0.125, 0.125)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $corr_high_txt
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    TextComponent cpdm_loop_instr_incorr_high_txt
      letterHeight = 0.03
      pos = (0.125, 0.125)
      saveStartStop = False
      startVal [time (s)] = 0
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      text:
        Incorrect
        High Confidence
        \$0
    TextComponent cpdm_loop_instr_corr_low_txt
      letterHeight = 0.03
      pos = (-0.125, -0.125)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Correct
        Low Confidence
        \$8
    TextComponent cpdm_loop_instr_incorr_low
      letterHeight = 0.03
      pos = (0.125, -0.125)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Incorrect
        Low Confidence
        \$6
    TextComponent cpdm_loop_instr_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent cpdm_loop_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cpdm_pract_iti
    CodeComponent cpdm_pract_iti_code
      Code Type = Both
      Begin JS Routine:
        if (!(cpdm_pract_trials.thisTrialN == undefined) && (cpdm_pract_trials.thisTrialN === 4)) {
            continueRoutine = false;
        }
      Begin Routine:
        if cpdm_pract_trials.thisTrialN == 4:
            continueRoutine = False
    PolygonComponent cpdm_pract_iti_poly
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine cpdm_trial_iti
    CodeComponent cpdm_trials_iti_code
      Code Type = Both
      Begin JS Routine:
        iti_time = (iti_list[my_loop.thisIndex] + delta_time);
        if (!(cpdm_trials.thisTrialN == undefined) && (cpdm_trials.thisTrialN === 199)) {
            continueRoutine = false;
        }
      Begin Routine:
        #variable ITI for non-practice trials
        iti_time = iti_list[my_loop.thisIndex] + delta_time

        if cpdm_trials.thisTrialN == 199:
            continueRoutine = False
      End JS Routine:
        my_loop.addData("delta_time", delta_time);
        my_loop.addData("iti_time", iti_time);
      End Routine:
        #record delta time
        my_loop.addData("delta_time", delta_time)
        #record iti time
        my_loop.addData("iti_time", iti_time)
    PolygonComponent cpdm_trials_iti_poly
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_time
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Flow
  Routine cpdm_instructions1
  Routine cpdm_instructions2
  Routine cpdm_practice_instr
  Routine cpdm_init_fix
  LoopInitiator cpdm_pract_trials loopType="TrialHandler"
    conditionsFile = cpdm_practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'task_name': 'cpdm', 'gabor_orient': 2.5, 'gabor_contrast': 0.025, 'run_dimension': 'practice'},
      {'task_name': 'cpdm', 'gabor_orient': 2, 'gabor_contrast': 0.05, 'run_dimension': 'practice'},
      {'task_name': 'cpdm', 'gabor_orient': 0, 'gabor_contrast': 0.2, 'run_dimension': 'practice'},
      {'task_name': 'cpdm', 'gabor_orient': -2, 'gabor_contrast': 0.25, 'run_dimension': 'practice'},
      {'task_name': 'cpdm', 'gabor_orient': -2.5, 'gabor_contrast': 0.1, 'run_dimension': 'practice'}]
    Routine cpdm_pract_trial
    Routine cpdm_pract_iti
  LoopTerminator cpdm_pract_trials
  Routine cpdm_trial_instr
  LoopInitiator condition_runs loopType="TrialHandler"
    conditionsFile = cpdm_run_type.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'run_dimension': 'low_vol_low_risk'},
      {'run_dimension': 'low_vol_high_risk'},
      {'run_dimension': 'high_vol_low_risk'},
      {'run_dimension': 'high_vol_high_risk'}]
    Routine cpdm_run_setter
    Routine cpdm_loop_instr
    Routine cpdm_init_fix
    LoopInitiator cpdm_trials loopType="TrialHandler"
      conditionsFile = $run_schedule
      loopType = random
      nReps = 1
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      Routine cpdm_trial
      Routine cpdm_trial_iti
    LoopTerminator cpdm_trials
    Routine cpdm_run_break
  LoopTerminator condition_runs
  Routine cpdm_bonus
