PsychoPy2experiment version="2022.2.4"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s' % (expInfo['participant'], expInfo['session'])
  Experiment info = {'participant': 'NIH', 'session': 'S1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2022.2.4
  Window size (pixels) = [1920, 1080]
  expName = CRDM_ICR
  keyboardBackend = Pyglet
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Routines
  Routine crdm_instr1
    CodeComponent crdm_instr1_py
      Code Type = Py
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      Before Experiment:
        ###code written by Mandy Renfro (2023)###

        import random
        exp_proceed = True
        earnings = []

        confkey_map = {"2": "1", "3": "2", "j": "3", "k": "4", None: None} #for Cedrus box code mapping
      Begin Routine:
        #provides specific loop names for each of two interations of CRDM
        #to provide flexibility of crdm_pract_trial and crdm_trial routines
        practice_loop_name = "crdm_pract_trials"
        loop_name = "crdm_trials"
    TextComponent crdm_instr1_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Risk & Ambiguity Task *
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    TextComponent crdm_instr1_txt
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        In this decision making task, you will be asked to make economic choices between:


        - Gaining/losing a certain amount
        OR
        - Playing a lottery for the chance to win a larger gain or smaller loss
    TextComponent crdm_instr1_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_instr2
    TextComponent crdm_instr2_lottname_txt
      letterHeight = 0.05
      pos = (-0.2, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = *Playing the Lottery*
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    TextComponent crdm_instr2_txt
      letterHeight = 0.04
      pos = (-0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        The lottery consists of an imaginary bag containing 100 poker chips, some red and some blue. To play, you pull a random chip from the bag.

        The figure on the right represents the proportion of blue and red chips in the imaginary bag.

        In this example, most chips are blue (75 of 100) and fewer are red (25 of 100).
    ImageComponent crdm_instr2_img
      image = images/risk_blue_75.bmp
      pos = (0.6, 0)
      saveStartStop = False
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent crdm_instr2_lott0_txt
      letterHeight = 0.04
      pos = (0.6, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$0
      wrapWidth = 1.5
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    TextComponent crdm_instr2_lott20_txt
      letterHeight = 0.04
      pos = (0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$20
      wrapWidth = 1.5
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    TextComponent crdm_instr2_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_instr3
    TextComponent crdm_instr3_lottname_txt
      letterHeight = 0.05
      pos = (-0.2, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = *Playing the Lottery*
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    TextComponent crdm_instr3_txt
      letterHeight = 0.04
      pos = (-0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Given information about the number of blue and red chips in the bag, you can decide whether you would prefer a certain monetary outcome or if you would rather play the lottery for a chance to win a different outcome

        In this example, you have a 75% chance of pulling a blue chip and winning \$20. Conversely, you have a 25% chance of pulling a red chip and receiving \$0.

        The value for each color will change from bag to bag. Read the \$ amount above the red and below the blue to know the value of each chip color.
    ImageComponent crdm_instr3_img
      image = images/risk_blue_75.bmp
      pos = (0.6, 0)
      saveStartStop = False
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent crdm_instr3_lott0_txt
      letterHeight = 0.04
      pos = (0.6, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$0
      wrapWidth = 1.5
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    TextComponent crdm_instr3_lott20_txt
      letterHeight = 0.04
      pos = (0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$20
      wrapWidth = 1.5
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    TextComponent crdm_instr3_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr3_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_instr4
    TextComponent crdm_instr4_lottname_txt
      letterHeight = 0.05
      pos = (-0.2, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = *Playing the Lottery*
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    TextComponent crdm_instr4_txt
      letterHeight = 0.04
      pos = (-0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        For some lotteries, information about the contents of the bag may be partially hidden.

        In this example, the bag has at least 25 blue chips and 25 red chips. However, the color of the remaining 50 chips is unknown. The remaining 50 chips could be all red, all blue, or any combination of the two.
    ImageComponent crdm_instr4_img
      image = images/ambig_50.bmp
      pos = (0.6, 0)
      saveStartStop = False
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent crdm_instr4_lott0_txt
      letterHeight = 0.04
      pos = (0.6, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$0
      wrapWidth = 1.5
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    TextComponent crdm_instr4_lott20_txt
      letterHeight = 0.04
      pos = (0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$20
      wrapWidth = 1.5
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    TextComponent crdm_instr4_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr4_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_instr5
    TextComponent crdm_instr5_txt
      letterHeight = 0.035
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = The lottery bag will appear in the center of the screen. The certain dollar amount will be presented on either the right or left side of the bag. In this example, the certain \$5 would be the left option, and the lottery would be the right option:
      wrapWidth = 1.5
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    ImageComponent crdm_instr5_img
      image = images/risk_blue_75.bmp
      pos = (0, -0.05)
      saveStartStop = False
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent crdm_instr5_lott_top_txt
      letterHeight = 0.04
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$0
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    TextComponent crdm_instr5_lott_bot_txt
      letterHeight = 0.04
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$20
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    TextComponent crdm_instr5_sure_txt
      letterHeight = 0.06
      pos = (-0.5, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$5
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    TextComponent crdm_instr5_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr5_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_instr6
    TextComponent crdm_instr6_txt
      letterHeight = 0.04
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        When the green circle appears, use the color buttons on the response pad to indicate your choice:

        Press YELLOW to select the left option
        Press GREEN to select the right option
    ImageComponent crdm_instr6_img
      image = images/response_box1-2.png
      pos = (0, -0.1)
      saveStartStop = False
      size = (0.6, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent crdm_instr6_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr6_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_instr7
    TextComponent crdm_instr7_txt
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.35
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      text:
        After each choice, you will be asked to rate your choice confidence.
        1 indicates you couldn't decide which option you preferred and chose at random, while 4 indicates total certainty in your choice. Use the number keys on the response pad to indicate your confidence:
    ImageComponent crdm_instr7_img
      image = images/response_box1-2.png
      pos = (0, -0.15)
      saveStartStop = False
      size = (0.6, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent crdm_instr7_left_txt
      letterHeight = 0.04
      pos = (-0.575, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        1 - Not at all confident
         2 - Less confident
    TextComponent crdm_instr7_right_txt
      letterHeight = 0.04
      pos = (0.575, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        3 - Somewhat confident
         4 - Very confident
    TextComponent crdm_instr7_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr7_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_pract_instr
    TextComponent crdm_pract_instr_name_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Risk & Ambiguity Task *
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    TextComponent crdm_pract_instr_txt
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        Let's practice!

        When the green circle appears, indicate your decision by pressing YELLOW for the left option and GREEN for the right option. Next, you will rate your confidence.

        Please be sure to answer both the task and confidence prompts, or the trial will be considered incomplete.
    TextComponent crdm_pract_instr_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to begin.
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    KeyboardComponent crdm_pract_instr_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_init_fix
    PolygonComponent crdm_init_fix_poly
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine crdm_pract_trial
    CodeComponent crdm_pract_trial_py
      Code Type = Py
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      Begin Experiment:
        #position of certain amount option
        sure_pos = [] #position on screen of sure amt
        sure_resp = [] #response key associated with sure amt
        crdm_msg = ""

        #stimuli positions and respective responses
        pos = [[-0.5, 0], [0.5, 0]] #left/right screen locations
        resp = ["4", "5"] #4 = left, 5 = right
      Begin Routine:
        my_loop = eval(practice_loop_name)

        idx = random.randint(0,1) #random index for certain outcome position and response
        sure_pos = pos[idx] #index of randomly selected sure amt position on screen
        sure_resp = resp[idx] #index of randomly selected sure amt response key
      End Routine:
        pract_key = crdm_pract_trial_resp.keys
        pract_sure_chosen = crdm_pract_trial_resp.corr #sure response chosen = 1, lottery chosen = 0

        my_loop.addData("crdm_trial_type", "practice")
        print("Sure Chosen?", pract_sure_chosen)
        print(pract_key, sure_resp)
    ImageComponent crdm_pract_trial_img
      image [set every repeat] = $"images/" + crdm_img
      saveStartStop = False
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent crdm_pract_trial_lott_top_txt
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $str("$"+str(crdm_lott_top))
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    TextComponent crdm_pract_trial_lott_bot_txt
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $str("$"+str(crdm_lott_bot))
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    TextComponent crdm_pract_trial_sure_amt_txt
      letterHeight = 0.06
      pos [set every repeat] = sure_pos
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text [set every repeat]:
        $str("$"+str(crdm_sure_amt))
    PolygonComponent GRFX_fix2
      fillColor = [0,0,0]
      lineColor = [0,0,0]
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 3
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    PolygonComponent crdm_pract_trial_cue
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, 1.0000, -1.0000
      saveStartStop = False
      shape = circle
      size = (0.04, 0.04)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 3
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    KeyboardComponent crdm_pract_trial_resp
      allowedKeys = "4", "5"
      correctAns = $sure_resp
      forceEndRoutine = True
      startVal [time (s)] = 4
      stopVal [duration (s)] = 3
      store = first key
      storeCorrect = True
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  Routine crdm_feedback
    CodeComponent crdm_feedback_py
      Code Type = Py
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      Begin Routine:
        if len(key) == 0: #Ss did not respond
            crdm_msg = "No Response"
        elif sure_chosen: #Ss chose sure $5
            crdm_msg = "CERTAIN $" + str(crdm_sure_amt)
        else: #Ss chose lottery
            crdm_msg = "LOTTERY"
    TextComponent crdm_feedback_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $crdm_msg
      wrapWidth = 1.5
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  Routine crdm_conf
    CodeComponent crdm_conf_py
      Code Type = Py
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      Begin Routine:
        #Ss did not respond
        if len(key) == 0:
            continueRoutine = False
            my_loop.addData("crdm_confkey", "")

        #set default gray for all four response boxes
        conf1_color = [0, 0, 0]
        conf2_color = [0, 0, 0]
        conf3_color = [0, 0, 0]
        conf4_color = [0, 0, 0]
      Each Frame:
        #resp is received
        conf_key = crdm_conf_resp.keys
        if len(conf_key) == 1:
            conf_key = confkey_map[conf_key[-1]]
            #not at all confident
            if conf_key == "1":
                #change box color to indicate selection
                conf1_color = "darkgray"
                conf2_color = [0,0,0]
                conf3_color = [0,0,0]
                conf4_color = [0,0,0]
            #less confident
            elif conf_key == "2":
                conf1_color = [0,0,0]
                conf2_color = "darkgray"
                conf3_color = [0,0,0]
                conf4_color = [0,0,0]
            #somewhat confident
            elif conf_key == "3":
                conf1_color = [0,0,0]
                conf2_color = [0,0,0]
                conf3_color = "darkgray"
                conf4_color = [0,0,0]
            #very confident
            elif conf_key == "4":
                conf1_color = [0,0,0]
                conf2_color = [0,0,0]
                conf3_color = [0,0,0]
                conf4_color = "darkgray"
      End Routine:
        if len(conf_key) == 1:
            if type(conf_key) == list:
                if conf_key[-1] in ["1", "2", "3", "4"]:
                    my_loop.addData("crdm_confkey", conf_key)
                    conf_resps.append(conf_key)
            else:
                if conf_key in ["1", "2", "3", "4"]:
                    my_loop.addData("crdm_confkey", conf_key)
                    conf_resps.append(conf_key)
    TextComponent crdm_conf_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = How confident are you in your choice?
      wrapWidth = 1.5
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    PolygonComponent crdm_conf1
      fillColor [set every frame] = $conf1_color
      lineWidth = 10
      pos = (-0.6, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent crdm_conf1_txt
      letterHeight = 0.04
      pos = (-0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        Not at all
        confident

        1
    PolygonComponent crdm_conf2
      fillColor [set every frame] = $conf2_color
      lineWidth = 10
      pos = (-0.2, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent crdm_conf2_txt
      letterHeight = 0.04
      pos = (-0.2, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        Less
        confident

        2
    PolygonComponent crdm_conf3
      fillColor [set every frame] = $conf3_color
      lineWidth = 10
      pos = (0.2, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent crdm_conf3_txt
      letterHeight = 0.04
      pos = (0.2, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        Somewhat
        confident

        3
    PolygonComponent crdm_conf4
      fillColor [set every frame] = $conf4_color
      lineWidth = 10
      pos = (0.6, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent crdm_conf4_txt
      letterHeight = 0.04
      pos = (0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        Very
        confident

        4
    KeyboardComponent crdm_conf_resp
      allowedKeys = '2', '3', 'j', 'k'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine crdm_pract_iti
    CodeComponent crdm_pract_iti1_py
      Code Type = Py
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      Begin Routine:
        #3 CRDM practice trials
        if crdm_pract_trials.thisTrialN == 5:
            continueRoutine = False
    PolygonComponent crdm_pract_iti1_poly
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine crdm_trial_instr
    CodeComponent crdm_trial_instr_py
      Code Type = Py
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      Begin Routine:
        #Task QC check variables
        task_resps = []
        conf_resps = []
        catch_trials = []

        iti_list = [random.random() for i in range(112)] #range of the number of trials (112)
        s = sum(iti_list)
        iti_list = [i*112/s for i in iti_list]
    TextComponent crdm_trial_instr_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Risk & Ambiguity Task *
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    TextComponent crdm_trial_instr_txt
      letterHeight = 0.04
      pos = (0, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        Now that you have practiced, the actual task will begin.

        Make your choice between the certain outcome and lottery as soon as you see the green circle. You will have 4 seconds to consider and 2 seconds to respond. You will then have an additional 2 seconds to rate your choice confidence.

        When a white cross appears, please focus your attention on the center of the screen.
    TextComponent crdm_trial_instr_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to begin.
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    KeyboardComponent crdm_trial_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_trial
    CodeComponent crdm_trial_py
      Code Type = Py
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      Begin Experiment:
        #used in variable ITI
        delta_time = 0
        #position of certain amount option
        sure_pos = []
        sure_resp = []
        crdm_msg = ""

        #stimuli positions and respective responses
        #left/right screen locations
        pos = [[-0.5, 0], [0.5, 0]]
        #1 = left, 2 = right
        resp = ["4", "5"]
      Begin Routine:
        #variable for saving data
        my_loop = eval(loop_name)
        stop_timer = None
        stopped_time = 0
        lott_outcome = 0

        #random index for certain outcome position and response
        idx = random.randint(0,1)
        sure_pos = pos[idx]
        sure_resp = resp[idx]

        #certain outcome screen position is left/right, lottery is opposite
        if idx == 0:
            lott_pos = pos[1]
        else:
            lott_pos = pos[0]
      Each Frame:
        #Ss responded
        if len(crdm_trial_resp.keys) == 1:
            if stop_timer == None:
                stop_timer = core.Clock()
            else:
                if stop_timer.getTime() >= 0.5:
                    continueRoutine = False
      End Routine:
        #variable for feedback routine
        key = crdm_trial_resp.keys
        #1 if certain $ selected
        sure_chosen = crdm_trial_resp.corr
        my_loop.addData("crdm_trial_type", "task")

        #delta time is leftover time excluding rt
        if type(crdm_trial_resp.rt) is list or crdm_trial_resp.rt >= 3 - 0.5: #first value is time Ss has to respond
            delta_time = 0
        else:
            delta_time = max(0, 3 - (crdm_trial_resp.rt + stopped_time)) #second value is time Ss has to respond

        #pseudo-random chip draw using bag probabilities and store/record outcome
        if len(key) == 1: #response received
            #certain option
            if sure_chosen == 1:
                #-1 is placeholder for lott_outcome
                earnings.append(("sure", crdm_sure_amt, crdm_img, crdm_lott_top, crdm_lott_bot, -1, crdm_win_side, crdm_domain))
                my_loop.addData("crdm_choice", 0)
                my_loop.addData("crdm_choice2", "sure")
                my_loop.addData("crdm_lott", "")
                my_loop.addData("crdm_lott2", "")
            #lottery option
            else:
                #probability from bag parameters
                lott_outcome = random.choices([0,1], weights=[100-int(crdm_lott_p), int(crdm_lott_p)])[0]
                #record Ss choice
                my_loop.addData("crdm_choice", 1)
                my_loop.addData("crdm_choice2", "lott")
                #record lottery outcome

                #win
                if lott_outcome == 1:
                    my_loop.addData("crdm_lott", 1)
                    my_loop.addData("crdm_lott2", "win")
                    #gain domain trial
                    if crdm_domain == "gain":
                        #check which side was worth money
                        if int(crdm_lott_top) != 0:
                            #top side is winner
                            earnings.append(("lott", crdm_lott_top, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_win_side, crdm_domain))
                        else:
                            #bottom side is winner
                            earnings.append(("lott", crdm_lott_bot, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_win_side, crdm_domain))
                    #loss domain trial
                    else:
                        if int(crdm_lott_top) == 0:
                        #top side is winner
                            earnings.append(("lott", crdm_lott_top, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_win_side, crdm_domain))
                        else:
                            #bottom side is winner
                            earnings.append(("lott", crdm_lott_bot, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_win_side, crdm_domain))
                #lose
                else:
                    #losing lottery
                    my_loop.addData("crdm_lott", 0)
                    my_loop.addData("crdm_lott2", "lose")
                    earnings.append(("lott", 0, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_win_side, crdm_domain))
    ImageComponent crdm_trial_img
      image [set every repeat] = $"images/" + crdm_img
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent crdm_trial_lott_top
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $str("$"+str(crdm_lott_top))
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    TextComponent crdm_trial_lott_bot
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $str("$"+str(crdm_lott_bot))
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    TextComponent crdm_trial_sure_amt
      letterHeight = 0.06
      pos [set every repeat] = sure_pos
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $str("$"+str(crdm_sure_amt))
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    PolygonComponent GRFX_fix
      fillColor = [0,0,0]
      lineColor = [0,0,0]
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 3
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    PolygonComponent crdm_trial_cue
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, 1.0000, -1.0000
      saveStartStop = False
      shape = circle
      size = (0.04, 0.04)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 3
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    KeyboardComponent crdm_trial_resp
      allowedKeys = '4', '5'
      correctAns = $sure_resp
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 4
      stopVal [duration (s)] = 3
      storeCorrect = True
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  Routine crdm_trials_iti
    CodeComponent crdm_trials_iti1_py
      Code Type = Py
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      Begin Routine:
        iti_time = iti_list[my_loop.thisIndex] + delta_time #variable ITI for non-practice trials

        if crdm_trials.thisTrialN == 111: #number of trials
            continueRoutine = False #don't show ITI target after final trial
      End Routine:
        #record delta time
        my_loop.addData("crdm_delta_time", delta_time)
        #record iti time
        my_loop.addData("crdm_iti_time", iti_time)
    PolygonComponent crdm_trials_iti1_poly
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_time
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  Routine crdm_end
    CodeComponent crdm_end_py
      Code Type = Py
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      Begin Experiment:
        task_end_text = ""
        space_text = ""
      Begin Routine:
        unique_resps = []
        unique_count = 0
        for i in task_resps:
            if i not in unique_resps:
                unique_count += 1
                unique_resps.append(i)

        task_end_text = ""
        space_text = ""
        #filter for nonresponses
        if len(task_resps) < 76 or len(conf_resps) < 76: #95% of 80 CRDM trials
            if len(task_resps) < 76:
                task_end_text = "You failed to respond to " + str(80-len(task_resps)) + " task trials and did not meet the 95% response rate requirement. \n \n The Risk & Ambiguity Task will now close."
            if len(conf_resps) < 76:
                task_end_text = "You failed to respond to both parts of " + str(80-len(conf_resps)) + " trials and did not meet the 95% response rate requirement. \n \n The Risk & Ambiguity Task will now close."
            space_text = "Press SPACE to end."
            exp_proceed = False
            my_loop.addData("crdm_subReject1", "< 95% resp rate")
            my_loop.addData("crdm_subReject1_nonresps-task", 80-len(task_resps))
            my_loop.addData("crdm_subReject1_nonresps-conf", 80-len(conf_resps))
        #filter for single-button responses
        elif unique_count < 2: #same for each exp
            task_end_text = "You provided the same response to all " + str(len(task_resps)) + " trials. \n \n You did not follow task instructions. \n \n The Risk & Ambiguity Task will now close."
            space_text = "Press SPACE to end."
            exp_proceed = False
            my_loop.addData("crdm_subReject2", "1key response")
            my_loop.addData("crdm_subReject2_key", task_resps[0])
        #filter for poor performance on CRDM catch trials (10/20 catch trials -- 0.097% of random success on 10 trials)
        elif sum(catch_trials) < 10:
            task_end_text = "Your performance on the previous trial block demonstrates you did not follow task instructions. \n \n The Risk & Ambiguity Task will now close."
            space_text = "Press SPACE to end."
            exp_proceed = False
            my_loop.addData("crdm_subReject3", "catch fail")
            my_loop.addData("crdm_subReject3_fails", 20-sum(catch_trials))
        #all CRDM task trial criterion are met
        else:
            task_end_text = "You have completed the Risk & Ambiguity Task!"
            space_text = "Press SPACE to continue."
    TextComponent crdm_end_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Risk & Ambiguity Task *
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    TextComponent crdm_end_txt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $task_end_text
      wrapWidth = 1.35
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    TextComponent crdm_end_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $space_text
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    KeyboardComponent crdm_end_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_term_check
    CodeComponent crdm_term_check_py
      Code Type = Py
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      Begin Routine:
        if exp_proceed == False:
            core.quit()
  Routine crdm_bonus
    CodeComponent crdm_bonus_py
      Code Type = Py
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      Begin Routine:
        #indexing examples
        #certain chosen - ("sure", 5, crdm_img, crdm_lott_top, crdm_lott_bot, -1, crdm_win_side, crdm_domain)
        #lotto chosen, win top - ("lott", crdm_lott_top, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_win_side, crdm_domain))
        #lotto chosen, win bottom - ("lott", crdm_lott_bot, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_win_side, crdm_domain)
        #lotto chosen, lose - ("lott", 0, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_win_side, crdm_domain)

        earnings_text = ""
        idx = int(random.random() * len(earnings)) #random selection of bonus trial
        choice, money, trial_img, top, bottom, outcome, winning_side, domain = earnings[idx]
        #sure_amt = 5
        my_loop.addData("bonus_choice", choice) #record bonus trial choice
        my_loop.addData("bonus_earnings", 50+money) #record bonus money to be paid (added or subtracted from initial allotment of $50)

        red_win = False
        if "red" in trial_img: #red wins in non-ambiguous trial
            red_win = True
        else: #blue wins or ambiguous red trial
            if "ambig" in trial_img: #ambiguous trial
                if winning_side == "top": #red wins
                    red_win = True

        #text for bonus payment screen
        if choice == "cert": ##Ss chose certain $5
            earnings_text = "In the randomly selected trial, you chose: \n \n A CERTAIN $" + str(money)
        else: ##Ss chose lottery
            earnings_text = "In the randomly selected trial, you chose: \n \n PLAY THE LOTTERY! \n \n You will now draw a chip from the lottery bag with these possible values. \n \n Good luck!"
    ImageComponent crdm_bonus_img
      image [set every repeat] = $"images/" + trial_img
      pos = (0.6, -0.1)
      saveStartStop = False
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent crdm_bonus_thanks_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Thank you for participating in the Risk & Ambiguity Task!
      wrapWidth = 1.5
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    TextComponent crdm_bonus_box
      letterHeight = 0.04
      pos = (-0.20, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $earnings_text
      wrapWidth = 1
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    TextComponent crdm_bonus_lott_top
      letterHeight = 0.04
      pos = (0.6, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $str("$"+str(crdm_lott_top))
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    TextComponent crdm_bonus_lott_bot
      letterHeight = 0.04
      pos = (0.6, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $str("$"+str(crdm_lott_bot))
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    TextComponent crdm_bonus_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to end
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    KeyboardComponent crdm_bonus_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_instr8
    TextComponent crdm_instr8_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Risk & Ambiguity Task *
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    TextComponent crdm_instr8_warn_txt
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        You must answer both the initial question and confidence prompts to complete each trial. The experiment will end if you (1) miss more than 4 trials, or (2) provide responses which indicate you did not understand, or are not following, task instructions. If this happens, you will not be eligible to receive a *bonus earnings*.

        Please remain engaged throughout the experiment and provide earnest, sincere responses for each trial. Remember, your choices could help you walk away with an additional bonus ranging from \$2 to \$65, depending on the seleced *bonus earnings* trial!

        Thank you for your participation!
    TextComponent crdm_instr8_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr8_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_pract_feedback
    CodeComponent crdm_pract_feedback_py
      Code Type = Py
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      Begin Routine:
        if len(pract_key) == 0: #Ss did not respond
            crdm_msg = "No Response"
        elif pract_sure_chosen: #Ss chose sure $5
            crdm_msg = "CERTAIN $" + str(crdm_sure_amt)
        else: #Ss chose lottery
            crdm_msg = "LOTTERY"
    TextComponent crdm_pract_feedback_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $crdm_msg
      wrapWidth = 1.5
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  Routine crdm_pract_conf
    CodeComponent crdm_pract_conf_py
      Code Type = Py
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      Begin Routine:
        #Ss did not respond
        if len(pract_key) == 0:
            continueRoutine = False

        #set default gray for all four response boxes
        conf1_color = [0, 0, 0]
        conf2_color = [0, 0, 0]
        conf3_color = [0, 0, 0]
        conf4_color = [0, 0, 0]
      Each Frame:
        #resp is received
        pract_conf_key = crdm_pract_conf_resp.keys
        if len(pract_conf_key) == 1:
            pract_conf_key = confkey_map[pract_conf_key[-1]]
            #not at all confident
            if pract_conf_key == "1":
                #change box color to indicate selection
                conf1_color = "darkgray"
                conf2_color = [0,0,0]
                conf3_color = [0,0,0]
                conf4_color = [0,0,0]
            #less confident
            elif pract_conf_key == "2":
                conf1_color = [0,0,0]
                conf2_color = "darkgray"
                conf3_color = [0,0,0]
                conf4_color = [0,0,0]
            #somewhat confident
            elif pract_conf_key == "3":
                conf1_color = [0,0,0]
                conf2_color = [0,0,0]
                conf3_color = "darkgray"
                conf4_color = [0,0,0]
            #very confident
            elif pract_conf_key == "4":
                conf1_color = [0,0,0]
                conf2_color = [0,0,0]
                conf3_color = [0,0,0]
                conf4_color = "darkgray"
    TextComponent crdm_pract_conf_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = How confident are you in your choice?
      wrapWidth = 1.5
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    PolygonComponent crdm_pract_conf1
      fillColor [set every frame] = $conf1_color
      lineWidth = 10
      pos = (-0.6, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent crdm_pract_conf1_txt
      letterHeight = 0.04
      pos = (-0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        Not at all
        confident

        1
    PolygonComponent crdm_pract_conf2
      fillColor [set every frame] = $conf2_color
      lineWidth = 10
      pos = (-0.2, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent crdm_pract_conf2_txt
      letterHeight = 0.04
      pos = (-0.2, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        Less
        confident

        2
    PolygonComponent crdm_pract_conf3
      fillColor [set every frame] = $conf3_color
      lineWidth = 10
      pos = (0.2, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent crdm_pract_conf3_txt
      letterHeight = 0.04
      pos = (0.2, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        Somewhat
        confident

        3
    PolygonComponent crdm_pract_conf4
      fillColor [set every frame] = $conf4_color
      lineWidth = 10
      pos = (0.6, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent crdm_pract_conf4_txt
      letterHeight = 0.04
      pos = (0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        Very
        confident

        4
    KeyboardComponent crdm_pract_conf_resp
      allowedKeys = '2', '3', 'j', 'k'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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Flow
  Routine crdm_instr1
  Routine crdm_instr2
  Routine crdm_instr3
  Routine crdm_instr4
  Routine crdm_instr5
  Routine crdm_instr6
  Routine crdm_instr7
  Routine crdm_pract_instr
  Routine crdm_init_fix
  LoopInitiator crdm_pract_trials loopType="TrialHandler"
    conditionsFile = crdm_practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'item': 1, 'crdm_sure_amt': 5, 'crdm_sure_p': 100, 'crdm_lott_top': 20, 'crdm_lott_bot': 0, 'crdm_lott_p': 13, 'crdm_amb_lev': 0, 'crdm_domain': 'gain', 'crdm_img': 'risk_red_13.bmp', 'crdm_win_side': 'top'},
      {'item': 2, 'crdm_sure_amt': 5, 'crdm_sure_p': 100, 'crdm_lott_top': 0, 'crdm_lott_bot': 50, 'crdm_lott_p': 25, 'crdm_amb_lev': 0, 'crdm_domain': 'gain', 'crdm_img': 'risk_blue_25.bmp', 'crdm_win_side': 'bottom'},
      {'item': 3, 'crdm_sure_amt': 5, 'crdm_sure_p': 100, 'crdm_lott_top': 40, 'crdm_lott_bot': 0, 'crdm_lott_p': 50, 'crdm_amb_lev': 74, 'crdm_domain': 'gain', 'crdm_img': 'ambig_74.bmp', 'crdm_win_side': 'top'}]
    Routine crdm_pract_trial
    Routine crdm_pract_feedback
    Routine crdm_pract_conf
    Routine crdm_pract_iti
  LoopTerminator crdm_pract_trials
  Routine crdm_trial_instr
  Routine crdm_init_fix
  LoopInitiator crdm_trials loopType="TrialHandler"
    conditionsFile = crdm_trials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'crdm_sure_amt': 5, 'crdm_sure_p': 100, 'crdm_lott_top': 5, 'crdm_lott_bot': 0, 'crdm_lott_p': 13, 'crdm_amb_lev': 0, 'crdm_domain': 'gain', 'crdm_img': 'risk_red_13.bmp', 'crdm_win_side': 'top'},
      {'crdm_sure_amt': 5, 'crdm_sure_p': 100, 'crdm_lott_top': 0, 'crdm_lott_bot': 8, 'crdm_lott_p': 13, 'crdm_amb_lev': 0, 'crdm_domain': 'gain', 'crdm_img': 'risk_blue_13.bmp', 'crdm_win_side': 'bottom'},
      {'crdm_sure_amt': 5, 'crdm_sure_p': 100, 'crdm_lott_top': 0, 'crdm_lott_bot': 15, 'crdm_lott_p': 13, 'crdm_amb_lev': 0, 'crdm_domain': 'gain', 'crdm_img': 'risk_blue_13.bmp', 'crdm_win_side': 'bottom'},
      {'crdm_sure_amt': 5, 'crdm_sure_p': 100, 'crdm_lott_top': 20, 'crdm_lott_bot': 0, 'crdm_lott_p': 13, 'crdm_amb_lev': 0, 'crdm_domain': 'gain', 'crdm_img': 'risk_red_13.bmp', 'crdm_win_side': 'top'},
      {'crdm_sure_amt': 5, 'crdm_sure_p': 100, 'crdm_lott_top': 30, 'crdm_lott_bot': 0, 'crdm_lott_p': 13, 'crdm_amb_lev': 0, 'crdm_domain': 'gain', 'crdm_img': 'risk_red_13.bmp', 'crdm_win_side': 'top'},
      {'crdm_sure_amt': 5, 'crdm_sure_p': 100, 'crdm_lott_top': 0, 'crdm_lott_bot': 40, 'crdm_lott_p': 13, 'crdm_amb_lev': 0, 'crdm_domain': 'gain', 'crdm_img': 'risk_blue_13.bmp', 'crdm_win_side': 'bottom'},
      {'crdm_sure_amt': 5, 'crdm_sure_p': 100, 'crdm_lott_top': 50, 'crdm_lott_bot': 0, 'crdm_lott_p': 13, 'crdm_amb_lev': 0, 'crdm_domain': 'gain', 'crdm_img': 'risk_red_13.bmp', 'crdm_win_side': 'top'}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
    Routine crdm_trial
    Routine crdm_feedback
    Routine crdm_conf
    Routine crdm_trials_iti
  LoopTerminator crdm_trials
  Routine crdm_bonus
