PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['dd/2key.png', 'dd/dd_practice.xlsx', 'dd/dd_trials.xlsx', 'crdm/2key.png', 'crdm/4key.png', 'crdm/ambig_24.bmp', 'crdm/ambig_50.bmp', 'crdm/ambig_74.bmp', 'crdm/circle_green_20.bmp', 'crdm/crdm_practice.xlsx', 'crdm/crdm_trials.xlsx', 'crdm/risk_blue_13.bmp', 'crdm/risk_blue_25.bmp', 'crdm/risk_blue_38.bmp', 'crdm/risk_blue_50.bmp', 'crdm/risk_blue_75.bmp', 'crdm/risk_red_13.bmp', 'crdm/risk_red_25.bmp', 'crdm/risk_red_38.bmp', 'crdm/risk_red_50.bmp', 'crdm/risk_red_75.bmp', 'cpdm/cpdm_practice.xlsx', 'cpdm/cpdm_run_type.xlsx', 'cpdm/cpdm-2contrasts.xlsx', 'cpdm/cpdm-6contrasts.xlsx']
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  expName = combined_exp
  keyboardBackend = Pyglet
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Routines
  Routine dd_instructions1
    CodeComponent dd_instructions1_code
      Code Type = Auto->JS
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      Before Experiment:
        import random
        earnings = []

        #provides specific loop names for each of two interations of DD
        #to provide flexibility of dd_pract_trial and dd_trial routines
        practice_loop_name = "dd_pract_trials"
        loop_name = "dd_trials"
    TextComponent dd_instructions1_txt
      font = Ariel
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        Welcome to the Delay Discounting task!

        In this section, you will be asked to make several choices between two possible monetary rewards: a smaller amount you would receive now or a larger amount you would receive in the future. The value of each option, as well as the length of delay for the larger amount, will change across trials.

        One of your choices in this section may be selected as your bonus reward trial at the end of the experiment. If this is the case, you will receive the amount of money in the number of days you selected.

        Example:
        - If you chose \$25 dollars immediately, you would receive \$25 today.
        - If you chose \$50 in 15 days, you would receive \$50 after a 15 day delay.
    TextComponent dd_instructions1_space_txt
      font = Ariel
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent dd_instructions1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine dd_instructions2
    TextComponent dd_instruct2_txt
      font = Ariel
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 1.25
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      text:
        Please read the two options carefully. The immediate and delayed choices may switch sides across trials.

        Press 1 to select the left option
        Press 2 to select the right option








        When the green circle appears, you will have 2 seconds to make your selection.
    ImageComponent dd_instruct2_img
      image = 2key.png
      pos = (0, -0.05)
      saveStartStop = False
      size = (0.6, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent dd_instructions2_space_txt
      font = Ariel
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent dd_instruct2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine dd_instructions3
    TextComponent dd_instruction3_txt
      font = Ariel
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        *EXAMPLE TRIAL*

        Which would you prefer?













        Now let's try some practice trials!
    TextComponent dd_instruction3_immed_txt
      font = Ariel
      letterHeight = 0.04
      pos = (0.5, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        \$10

        TODAY
    TextComponent dd_instruction3_delay_txt
      font = Ariel
      letterHeight = 0.04
      pos = (-0.5, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        \$50

        9 DAYS
    TextComponent dd_instructions3_space_txt
      font = Ariel
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    TextComponent dd_instructions3_or_txt
      font = Ariel
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = OR
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    PolygonComponent dd_instructions3_right_poly
      lineWidth = 10
      pos = (0.5, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    PolygonComponent dd_instructions3_left_poly
      lineWidth = 10
      pos = (-0.5, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    KeyboardComponent dd_instructions3_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine dd_feedback
    CodeComponent dd_feedback_code
      Code Type = Auto->JS
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      Begin Routine:
        #Ss did not respond
        if len(key) == 0:
            dd_msg = "No response"
        #Ss chose smaller, immediate option
        elif immed_key:
            dd_msg = "You chose: NOT TO WAIT"
        #Ss chose larger, delayed option
        else:
            dd_msg = "You chose: TO WAIT"
    TextComponent dd_feedback_txt
      font = Ariel
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $dd_msg
      wrapWidth = 1.5
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  Routine dd_trial_instr
    CodeComponent dd_trial_instr_code
      Code Type = Auto->JS
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      Begin Routine:
        iti_list = [random.random() for i in range(90)]
        s = sum(iti_list)
        iti_list = [i*90/s for i in iti_list]
    TextComponent dd_trial_instr_txt
      font = Ariel
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        You will now begin the actual task.

        You will have 4 seconds to consider both options and 2 seconds once the green dot appears to indicate you choice.

        Press SPACE to begin.
    KeyboardComponent dd_trial_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine dd_pract_ITI
    PolygonComponent dd_pract_ITI_poly
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine dd_bonus_earnings
    CodeComponent dd_bonus_earnings_code
      Code Type = Auto->JS
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      Begin Routine:
        #random selection of bonus trial
        idx = int(random.random() * len(earnings))

        #first index in randomly selected trial identifies experiment
        #("DD", "immed", immed_amt, immed_wait, delay_amt, delay_wait)
        exp, choice =  earnings[idx][0:2]
        #Ss chose immediate amount on selected bonus trial
        if earnings[idx][1] == "immed":
            exp, choice, choice_amt, choice_wait, other_amt, other_wait = earnings[idx]
            my_loop.addData("bonus_choice", choice)
            my_loop.addData("bonus_amt", choice_amt)
            my_loop.addData("bonus_delay", choice_wait)
            choice_text = "$ " + str(choice_amt) + " TODAY"
            other_text = "$ " + str(other_amt) + " in " + str(other_wait) + " DAYS"

        #Ss chose delay amount on selected bonus trial
        else:
            exp, choice, other_amt, other_wait, choice_amt, choice_wait = earnings[idx]
            my_loop.addData("bonus_choice", choice)
            my_loop.addData("bonus_earnings", choice_amt)
            my_loop.addData("bonus_delay", choice_wait)
            choice_text = "$ " + str(choice_amt) + " in " + str(choice_wait) + " DAYS"
            other_text = "$ " + str(other_amt) + " TODAY"
    TextComponent dd_bonus_thanks_txt
      font = Ariel
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Thank you for participating in the Delay Discounting Task!
      wrapWidth = 1.25
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    TextComponent dd_bonus_earnings_box
      font = Ariel
      letterHeight = 0.04
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = In the randomly selected bonus trial, you chose to receive:
      wrapWidth = 1.25
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    TextComponent dd_bonus_earnings_choice_txt
      color = -1.0000, 1.0000, -1.0000
      font = Ariel
      letterHeight = 0.055
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $choice_text
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    TextComponent dd_bonus_earnings_other_txt
      color = 0.4510, -0.5294, -1.0000
      font = Ariel
      letterHeight = 0.055
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $other_text
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    TextComponent dd_bonus_rather_txt
      letterHeight = 0.035
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = rather than
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    TextComponent dd_bonus_end_txt
      font = Ariel
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to end
      wrapWidth = 1.25
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    KeyboardComponent dd_bonus_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine dd_pract_trial
    CodeComponent dd_pract_trial_code
      Code Type = Auto->JS
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      Begin Experiment:
        #position of immediate amt option
        immed_pos = []
        #which key is immediate amt option
        immed_resp = []
        dd_msg = ""

        #stimuli positions and respective responses
        #left/right screen locations
        pos = [[-0.5, 0], [0.5, 0]]
        #1 = left, 2 = right
        resp = ['1', '2']
      Begin Routine:
        my_loop = eval(practice_loop_name)
        #random selection of position and resp key
        idx = random.randint(0,1)

        immed_pos = pos[idx]
        immed_resp = resp[idx]

        #immed is left side
        if idx == 0:
            #delay is right
            delay_pos = pos[1]
        #immed is right side
        else:
            #delay is left
            delay_pos = pos[0]
      End Routine:
        #Ss response
        key = dd_pract_trial_resp.keys
        #1 when immediate amt is chosen
        immed_key = dd_pract_trial_resp.corr
    TextComponent dd_pract_trial_prompt_txt
      font = Ariel
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Which would you prefer?
      wrapWidth = 1.5
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    TextComponent dd_pract_trial_immed_txt
      font = Ariel
      letterHeight = 0.04
      pos [set every repeat] = immed_pos
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $str("$"+str(immed_amt)) + "\n" + "\n" + " TODAY"
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    TextComponent dd_pract_trial_delay_txt
      font = Ariel
      letterHeight = 0.04
      pos [set every repeat] = delay_pos
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $str("$"+str(delay_amt)) + "\n" + "\n" + str(delay_wait) + " DAYS"
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    TextComponent dd_pract_trial_or_txt
      font = Ariel
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = OR
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    PolygonComponent dd_pract_trial_left_poly
      lineWidth = 10
      pos = (-0.5, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    PolygonComponent dd_pract_trial_right_poly
      lineWidth = 10
      pos = (0.5, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    PolygonComponent dd_pract_trial_cue
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, 1.0000, -1.0000
      saveStartStop = False
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
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    KeyboardComponent dd_pract_trial_resp
      allowedKeys = '1', '2'
      correctAns = $immed_resp
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine dd_init_iti
    PolygonComponent polygon
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine dd_trial
    CodeComponent dd_trial_code
      Code Type = Auto->JS
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      Begin Experiment:
        delta_time = 0

        #position of immediate reward option
        immed_pos = []
        #button for immediate reward option
        immed_resp = []
        #feedback message
        dd_msg = ""
        #left/right screen positions
        pos = [[-0.5, 0], [0.5, 0]]
        #left/right response mapping
        resp = ['1', '2']
      Begin Routine:
        my_loop = eval(loop_name)
        stop_timer = None
        stopped_time = 0

        #random integer to determine side of immediate option
        idx = random.randint(0,1)

        #defines position of immed option
        immed_pos = pos[idx]
        #defines response button for immed option
        immed_resp = resp[idx]

        #immed position is left, delay is  right
        if idx == 0:
            delay_pos = pos[1]
        else:
            delay_pos = pos[0]
      Each Frame:
        #Ss responded
        if len(dd_trial_resp.keys) == 1:
            if stop_timer == None:
                stop_timer = core.Clock()
            else:
                stopped_time = stop_timer.getTime()
                if stopped_time >= 0.5:
                    continueRoutine = False
      End Routine:
        key = dd_trial_resp.keys
        #1 if immed option chosen
        immed_key = dd_trial_resp.corr

        if type(dd_trial_resp.rt) is list or dd_trial_resp.rt >= 2 - 0.5:
            delta_time = 0
        #Ss responded and not near end of resp window
        else:
            delta_time = max(0, 2 - (dd_trial_resp.rt + stopped_time))

        #code to record trials to earnings variable
        #response trial
        if len(key) == 1:
            #Ss chose immed amount
            if key == immed_resp:
                my_loop.addData("dd_choice", "immed")
                earnings.append(("DD", "immed", immed_amt, immed_wait, delay_amt, delay_wait))
            #Ss chose delay amount
            else:
                my_loop.addData("dd_choice", "delay")
                earnings.append(("DD", "delay", immed_amt, immed_wait, delay_amt, delay_wait))
    TextComponent dd_trial_prompt_txt
      font = Ariel
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Which would you prefer?
      wrapWidth = 1.25
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    TextComponent dd_trial_immed_txt
      font = Ariel
      letterHeight = 0.04
      pos [set every repeat] = immed_pos
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $str("$"+str(immed_amt)) + "\n" + "\n" + " TODAY"
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    TextComponent dd_trial_delay_txt
      font = Ariel
      letterHeight = 0.04
      pos [set every repeat] = delay_pos
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $str("$"+str(delay_amt)) + "\n" + "\n" + str(delay_wait) + " DAYS"
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    TextComponent dd_trial_or_txt
      font = Ariel
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = OR
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    PolygonComponent dd_trial_left_poly
      lineWidth = 10
      pos = (-0.5, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    PolygonComponent dd_trial_right_poly
      lineWidth = 10
      pos = (0.5, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    PolygonComponent dd_trial_cue
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, 1.0000, -1.0000
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
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    KeyboardComponent dd_trial_resp
      allowedKeys = '1', '2'
      correctAns = $immed_resp
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine dd_trial_ITI
    CodeComponent dd_trial_ITI_code
      Code Type = Auto->JS
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      Begin Routine:
        #variable ITI for non-practice trials
        iti_time = iti_list[my_loop.thisIndex] + delta_time
      End Routine:
        my_loop.addData("delta_time", delta_time)
        my_loop.addData("iti_time", iti_time)
    PolygonComponent dd_trial_ITI_poly
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_time
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Flow
  Routine dd_instructions1
  Routine dd_instructions2
  Routine dd_instructions3
  Routine dd_init_iti
  LoopInitiator dd_pract_trials loopType="TrialHandler"
    conditionsFile = dd_practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'immed_amt': 10, 'immed_wait': 0, 'delay_amt': 109, 'delay_wait': 9},
      {'immed_amt': 25, 'immed_wait': 0, 'delay_amt': 35, 'delay_wait': 150},
      {'immed_amt': 10, 'immed_wait': 0, 'delay_amt': 19, 'delay_wait': 89}]
    Routine dd_pract_trial
    Routine dd_feedback
    Routine dd_pract_ITI
  LoopTerminator dd_pract_trials
  Routine dd_trial_instr
  Routine dd_init_iti
  LoopInitiator dd_trials loopType="TrialHandler"
    conditionsFile = dd_practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'immed_amt': 10, 'immed_wait': 0, 'delay_amt': 109, 'delay_wait': 9},
      {'immed_amt': 25, 'immed_wait': 0, 'delay_amt': 35, 'delay_wait': 150},
      {'immed_amt': 10, 'immed_wait': 0, 'delay_amt': 19, 'delay_wait': 89}]
    Routine dd_trial
    Routine dd_feedback
    Routine dd_trial_ITI
  LoopTerminator dd_trials
  Routine dd_bonus_earnings
