PsychoPy2experiment version="2022.2.4"
Settings
  Audio lib = ptb
  Data filename = u'data/%s/session%s/%s_S%s_%s' % (expInfo['participant'], expInfo['session'], expInfo['participant'], expInfo['session'], expInfo['date'])
  Experiment info = {'participant': 'NIH', 'session': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = CRDM_ICR
  keyboardBackend = Pyglet
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Routines
  Routine crdm_instr1
    CodeComponent crdm_instr1_py
      Code Type = Py
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      Before Experiment:
        ###code written by Mandy Renfro (2023)###
        import random
        import os
        exp_proceed = True
        earnings = []

        import ricardo_gain as rg
        import ricardo_loss as rl
        #ADO Step 0
        g_log_lik, g_ent, g_log_post, g_sets = rg.step0() #gains
        l_log_lik, l_ent, l_log_post, l_sets = rl.step0() #losses

        confkey_map = {"2": "1", "3": "2", "j": "3", "k": "4", None: None} #for Cedrus box code mapping
      Begin Experiment:
        import os
        from datetime import datetime
        subid = expInfo["participant"]
        epoch = datetime.utcfromtimestamp(0)

        if not os.path.exists("data/{0}".format(subid)): #does subject exist
            os.mkdir("data/{0}".format(subid))
        if not os.path.exists("data/{0}/session{1}".format(subid, expInfo["session"])): #does session exist
            os.mkdir("data/{0}/session{1}".format(subid, expInfo["session"]))

        if os.path.exists("data/{0}/session{1}/session.log".format(subid, expInfo["session"])):
            os.remove("data/{0}/session{1}/session.log".format(subid, expInfo["session"]))

        def log_out(subid, *args):
            # "a" is append
            # "w" overwrites whatever previously existed
            with open("data/{0}/session{1}/session.log".format(subid, expInfo["session"]), "a") as f:
                for i in args:
                    f.write(str(i)+ "\t")
                f.write("\n")

        utc_start = int((datetime.utcnow() - epoch).total_seconds()*1000)
        log_out(subid, utc_start, 0, "log starts", "Task", "Conf", "Domain", "Stim", "Lott_Top", "Lott_Bot", "Trialx")
      Begin Routine:
        #provides specific loop names for each of two interations of CRDM
        #to provide flexibility of crdm_pract_trial and crdm_trial routines
        practice_loop1_name = "crdm_pract1_trials"
        practice_loop2_name = "crdm_pract2_trials"
        loop_name = "crdm_trials"
    TextComponent crdm_instr1_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Risk & Ambiguity Task *
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    TextComponent crdm_instr1_txt
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        In this decision making task, you will be asked to make economic choices between:


        - Gaining/losing a certain amount
        OR
        - Playing a lottery for the chance to win a larger gain or smaller loss
    TextComponent crdm_instr1_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_instr2
    TextComponent crdm_instr2_lottname_txt
      letterHeight = 0.05
      pos = (-0.2, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = *Playing the Lottery*
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    TextComponent crdm_instr2_txt
      letterHeight = 0.04
      pos = (-0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        The lottery consists of an imaginary bag containing 100 poker chips, some red and some blue. To play, you pull a random chip from the bag.

        The figure on the right represents the proportion of blue and red chips in the imaginary bag.

        In this example, most chips are blue (75 of 100) and fewer are red (25 of 100).
    ImageComponent crdm_instr2_img
      image = images/risk_blue_75.bmp
      pos = (0.6, 0)
      saveStartStop = False
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent crdm_instr2_lott0_txt
      letterHeight = 0.04
      pos = (0.6, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$0
      wrapWidth = 1.5
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    TextComponent crdm_instr2_lott20_txt
      letterHeight = 0.04
      pos = (0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$20
      wrapWidth = 1.5
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    TextComponent crdm_instr2_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_instr3
    TextComponent crdm_instr3_lottname_txt
      letterHeight = 0.05
      pos = (-0.2, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = *Playing the Lottery*
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    TextComponent crdm_instr3_txt
      letterHeight = 0.04
      pos = (-0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Given information about the number of blue and red chips in the bag, you can decide whether you would prefer a certain monetary outcome or if you would rather play the lottery for a chance to win a different outcome

        In this example, you have a 75% chance of pulling a blue chip and winning \$20. Conversely, you have a 25% chance of pulling a red chip and receiving \$0.

        The value for each color will change from bag to bag. Read the \$ amount above the red and below the blue to know the value of each chip color.
    ImageComponent crdm_instr3_img
      image = images/risk_blue_75.bmp
      pos = (0.6, 0)
      saveStartStop = False
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent crdm_instr3_lott0_txt
      letterHeight = 0.04
      pos = (0.6, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$0
      wrapWidth = 1.5
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    TextComponent crdm_instr3_lott20_txt
      letterHeight = 0.04
      pos = (0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$20
      wrapWidth = 1.5
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    TextComponent crdm_instr3_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr3_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_instr4
    TextComponent crdm_instr4_lottname_txt
      letterHeight = 0.05
      pos = (-0.2, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = *Playing the Lottery*
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    TextComponent crdm_instr4_txt
      letterHeight = 0.04
      pos = (-0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        For some lotteries, information about the contents of the bag may be partially hidden.

        In this example, the bag has at least 25 blue chips and 25 red chips. However, the color of the remaining 50 chips is unknown. The remaining 50 chips could be all red, all blue, or any combination of the two.
    ImageComponent crdm_instr4_img
      image = images/ambig_50.bmp
      pos = (0.6, 0)
      saveStartStop = False
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent crdm_instr4_lott0_txt
      letterHeight = 0.04
      pos = (0.6, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$0
      wrapWidth = 1.5
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    TextComponent crdm_instr4_lott20_txt
      letterHeight = 0.04
      pos = (0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$20
      wrapWidth = 1.5
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    TextComponent crdm_instr4_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr4_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_instr5
    TextComponent crdm_instr5_txt
      letterHeight = 0.035
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = The lottery bag will appear in the center of the screen. The certain dollar amount will be presented on either the right or left side of the bag. In this example, the certain \$5 would be the left option, and the lottery would be the right option:
      wrapWidth = 1.5
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    ImageComponent crdm_instr5_img
      image = images/risk_blue_75.bmp
      pos = (0, -0.05)
      saveStartStop = False
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent crdm_instr5_lott_top_txt
      letterHeight = 0.04
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$0
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    TextComponent crdm_instr5_lott_bot_txt
      letterHeight = 0.04
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$20
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    TextComponent crdm_instr5_sure_txt
      letterHeight = 0.06
      pos = (-0.5, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$5
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    TextComponent crdm_instr5_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr5_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_pract_instr
    TextComponent crdm_pract_instr_name_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Risk & Ambiguity Task *
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    TextComponent crdm_pract_instr_txt
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        In this first section, you will only be asked to indicate your choice between the certain outcome and the lottery. You will not be asked to rate your choice confidence.

        When the green circle appears, indicate your decision by pressing YELLOW for the left option and GREEN for the right option.

        Let's practice!
    TextComponent crdm_pract_instr_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to begin.
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    KeyboardComponent crdm_pract_instr_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_init_fix
    CodeComponent crdm_init_fix_py
      Code Type = Py
      Begin Routine:
        utc_iti = int((datetime.utcnow() - epoch).total_seconds()*1000)
        log_out(subid, utc_iti, 1, "Rand_ITIFix", -1, -1, "xxxx", "xxxxxxxxx", -1, -1, 1)
    PolygonComponent crdm_init_fix_poly
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine crdm_pract_trial
    CodeComponent crdm_pract_trial_py
      Code Type = Py
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      Begin Experiment:
        #position of certain amount option
        sure_pos = []
        sure_resp = []
        crdm_msg = ""

        #stimuli positions and respective responses
        #left/right screen locations
        pos = [[-0.5, 0], [0.5, 0]]
        resp = ["4", "5"] #4 = left, 5 = right
      Begin Routine:
        my_loop = eval(practice_loop2_name)

        #random index for certain outcome position and response
        idx = random.randint(0,1)
        sure_pos = pos[idx]
        sure_resp = resp[idx]
      End Routine:
        pract_key = crdm_pract_trial_resp.keys
        pract_sure_key = crdm_pract_trial_resp.corr

        my_loop.addData("crdm_trial_type", "practice")
    ImageComponent crdm_pract_trial_img
      image [set every repeat] = $"images/" + crdm_img
      saveStartStop = False
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent crdm_pract_trial_lott_top_txt
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $str("$"+str(crdm_lott_top))
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    TextComponent crdm_pract_trial_lott_bot_txt
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $str("$"+str(crdm_lott_bot))
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    TextComponent crdm_pract_trial_sure_amt_txt
      letterHeight = 0.06
      pos [set every repeat] = sure_pos
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text [set every repeat]:
        $str("$"+str(crdm_sure_amt))
    PolygonComponent GRFX_fix2
      fillColor = [0,0,0]
      lineColor = [0,0,0]
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 3
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    PolygonComponent crdm_pract_trial_cue
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, 1.0000, -1.0000
      saveStartStop = False
      shape = circle
      size = (0.04, 0.04)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 3
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    KeyboardComponent crdm_pract_trial_resp
      allowedKeys = "4", "5"
      correctAns = $sure_resp
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 4
      stopVal [duration (s)] = 3
      store = first key
      storeCorrect = True
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  Routine crdm_feedback
    CodeComponent crdm_feedback_py
      Code Type = Py
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      Begin Routine:
        utc_fb = int((datetime.utcnow() - epoch).total_seconds()*1000)

        #Ss did not respond
        if len(key) == 0:
            crdm_msg = "NO RESPONSE"
            log_out(subid, utc_fb, 1, "Task_FB-NonResp", -1, -1, crdm_domain, crdm_img.split(".")[0], crdm_lott_top, crdm_lott_bot, crdm_trials.thisTrialN+1)

            #Ss chose sure $5
        elif sure_key:
            crdm_msg = "CERTAIN $" + str(crdm_sure_amt)
            log_out(subid, utc_fb, 1, "Task_FB-Sure", -1, -1, crdm_domain, crdm_img.split(".")[0], crdm_lott_top, crdm_lott_bot, crdm_trials.thisTrialN+1)

            #Ss chose lottery
        else:
            crdm_msg = "LOTTERY"
            log_out(subid, utc_fb, 1, "Task_FB-Lott", -1, -1, crdm_domain, crdm_img.split(".")[0], crdm_lott_top, crdm_lott_bot, crdm_trials.thisTrialN+1)
    TextComponent crdm_feedback_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $crdm_msg
      wrapWidth = 1.5
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  Routine crdm_conf
    CodeComponent crdm_conf_py
      Code Type = Py
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      Begin Routine:
        utc_conf = int((datetime.utcnow() - epoch).total_seconds()*1000)
        conf_key = []

        if len(key) == 0: #Ss did not respond
            continueRoutine = False
            log_out(subid, utc_conf, 1, "Conf-NoStim", -1, -1, crdm_domain, crdm_img.split(".")[0], crdm_lott_top, crdm_lott_bot, crdm_trials.thisTrialN+1)
        else:
            log_out(subid, utc_conf, 1, "Conf_Stim", -1, -1, crdm_domain, crdm_img.split(".")[0], crdm_lott_top, crdm_lott_bot, crdm_trials.thisTrialN+1)

        #set default gray for all four response boxes
        conf1_color = [0, 0, 0]
        conf2_color = [0, 0, 0]
        conf3_color = [0, 0, 0]
        conf4_color = [0, 0, 0]
      Each Frame:
        conf_key = crdm_conf_resp.keys
        if len(conf_key) == 1: #Ss responded
            conf_key = confkey_map[conf_key[-1]]
            utc_confresp = int((datetime.utcnow() - epoch).total_seconds()*1000)
            if conf_key == "1": #not at all confident
                #change box color to indicate selection
                conf1_color = "darkgray"
                conf2_color = [0,0,0]
                conf3_color = [0,0,0]
                conf4_color = [0,0,0]
            elif conf_key == "2": #less confident
                conf1_color = [0,0,0]
                conf2_color = "darkgray"
                conf3_color = [0,0,0]
                conf4_color = [0,0,0]
            elif conf_key == "3": #somewhat confident
                conf1_color = [0,0,0]
                conf2_color = [0,0,0]
                conf3_color = "darkgray"
                conf4_color = [0,0,0]
            elif conf_key == "4": #very confident
                conf1_color = [0,0,0]
                conf2_color = [0,0,0]
                conf3_color = [0,0,0]
                conf4_color = "darkgray"
      End Routine:
        my_loop.addData("crdm_conf", conf_key) #record decoded confidence rating

        if len(conf_key) == 1: #Ss responded
            if type(conf_key) == list: #multiple key response
                if conf_key[-1] in ["1", "2", "3", "4"]:
                    log_out(subid, utc_confresp, 1, "Conf_Resp", -1, "{}".format(conf_key), crdm_domain, crdm_img.split(".")[0], crdm_lott_top, crdm_lott_bot, crdm_trials.thisTrialN+1)
                    conf_resps.append(conf_key)
            else: #single key response
                if conf_key in ["1", "2", "3", "4"]:
                    log_out(subid, utc_confresp, 1, "Conf_Resp", -1, "{}".format(conf_key), crdm_domain, crdm_img.split(".")[0], crdm_lott_top, crdm_lott_bot, crdm_trials.thisTrialN+1)
                    conf_resps.append(conf_key)
        elif crdm_trial_resp.keys: #Ss did not respond
            utc_confresp = int((datetime.utcnow() - epoch).total_seconds()*1000)
            log_out(subid, utc_confresp, 1, "Conf_NonResp", -1, 0, crdm_domain, crdm_img.split(".")[0], crdm_lott_top, crdm_lott_bot, crdm_trials.thisTrialN+1)
    TextComponent crdm_conf_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = How confident are you in your choice?
      wrapWidth = 1.5
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    PolygonComponent crdm_conf1
      fillColor [set every frame] = $conf1_color
      lineWidth = 10
      pos = (-0.6, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent crdm_conf1_txt
      letterHeight = 0.04
      pos = (-0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text:
        Not at all
        confident

        1
    PolygonComponent crdm_conf2
      fillColor [set every frame] = $conf2_color
      lineWidth = 10
      pos = (-0.2, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent crdm_conf2_txt
      letterHeight = 0.04
      pos = (-0.2, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text:
        Less
        confident

        2
    PolygonComponent crdm_conf3
      fillColor [set every frame] = $conf3_color
      lineWidth = 10
      pos = (0.2, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent crdm_conf3_txt
      letterHeight = 0.04
      pos = (0.2, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text:
        Somewhat
        confident

        3
    PolygonComponent crdm_conf4
      fillColor [set every frame] = $conf4_color
      lineWidth = 10
      pos = (0.6, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent crdm_conf4_txt
      letterHeight = 0.04
      pos = (0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text:
        Very
        confident

        4
    KeyboardComponent crdm_conf_resp
      allowedKeys = '2', '3', 'j', 'k'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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  Routine crdm_pract_iti
    CodeComponent crdm_pract_iti1_py
      Code Type = Py
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      Begin Routine:
        #3 CRDM practice trials
        if crdm_pract2_trials.thisTrialN == 5:
            continueRoutine = False
    PolygonComponent crdm_pract_iti1_poly
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine crdm_trial_instr
    CodeComponent crdm_trial_instr_py
      Code Type = Py
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      Begin Routine:
        task_resps = []
        conf_resps = []

        iti_list = [random.random() for i in range(100)] # create list of random floats (0-1) which is length of trial schedule
        s = sum(iti_list) #sum list of rnadom floats
        iti_list = [i*100/s for i in iti_list] #for each item in iti_list: multiple by list length, then divide by list sum
    TextComponent crdm_trial_instr_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Risk & Ambiguity Task *
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    TextComponent crdm_trial_instr_txt
      letterHeight = 0.04
      pos = (0, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        Now that you've practiced, we'll begin the second section of the task.

        You will have 4 seconds to view and consider the certain and lottery options, and 3 seconds to choose once the green circle appears. You will then have 4 seconds to rate your confidence.
    TextComponent crdm_trial_instr_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to begin.
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    KeyboardComponent crdm_trial_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_trial
    CodeComponent crdm_trial_py
      Code Type = Py
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      Begin Experiment:
        delta_time = 0 #used in variable ITI
        sure_pos = [] #position of certain amount option
        sure_resp = []
        crdm_msg = "" #feedback message string

        #stimuli positions and respective responses
        pos = [[-0.5, 0], [0.5, 0]] #left/right screen locations
        resp = ["4", "5"] #4 = left, 5 = right
      Begin Routine:
        utc_trial = int((datetime.utcnow() - epoch).total_seconds()*1000) #output log variable for Ss trial onset
        log_out(subid, utc_trial, 1, "Task_Stim", -1, -1, crdm_domain, crdm_img.split(".")[0], crdm_lott_top, crdm_lott_bot, crdm_trials.thisTrialN+1)
        log_out(subid, utc_trial+4000, 1, "Task_Cue", -1, -1, crdm_domain, crdm_img.split(".")[0], crdm_lott_top, crdm_lott_bot, crdm_trials.thisTrialN+1)

        my_loop = eval(loop_name) #variable for saving data
        stop_timer = None
        stopped_time = 0
        lott_outcome = 0

        #random index for certain outcome position and response
        idx = random.randint(0,1)
        sure_pos = pos[idx]
        sure_resp = resp[idx]
      Each Frame:
        if len(crdm_trial_resp.keys) == 1: #Ss responded
            if stop_timer == None:
                stop_timer = core.Clock()
            else:
                if stop_timer.getTime() >= 0.5:
                    continueRoutine = False
      End Routine:
        utc_resp = int((datetime.utcnow() - epoch).total_seconds()*1000) #output log variable for Ss response time

        key = crdm_trial_resp.keys #variable for feedback routine
        sure_key = crdm_trial_resp.corr #1 if certain $ selected
        my_loop.addData("crdm_trial_type", "task")


        #delta time is remaining time excluding rt
        if type(crdm_trial_resp.rt) is list or crdm_trial_resp.rt >= 2 - 0.5:
            delta_time = 0
        else:
            delta_time = max(0, 2 - (crdm_trial_resp.rt + stopped_time))

        if len(key) == 1: #response received from Ss
            if sure_key == 1: #certain option
                #-1 is placeholder for lott_outcome
                log_out(subid, utc_resp, 1, "Task_Resp-Sure", 1, -1, crdm_domain, crdm_img.split(".")[0], crdm_lott_top, crdm_lott_bot, crdm_trials.thisTrialN+1)
                earnings.append(("sure", crdm_sure_amt, crdm_img, crdm_lott_top, crdm_lott_bot, -1, crdm_nonzero_side, crdm_domain))
                my_loop.addData("crdm_choice", 0)
                my_loop.addData("crdm_choice2", "sure")
                my_loop.addData("crdm_lott", "")
                my_loop.addData("crdm_lott2", "")
            else: #lottery option
                log_out(subid, utc_resp, 1, "Task_Resp-Lott", 2, -1, crdm_domain, crdm_img.split(".")[0], crdm_lott_top, crdm_lott_bot, crdm_trials.thisTrialN+1)
                #probability from bag parameters
                lott_outcome = random.choices([0,1], weights=[100-int(crdm_lott_p), int(crdm_lott_p)])[0]
                #record Ss choice
                my_loop.addData("crdm_choice", 1)
                my_loop.addData("crdm_choice2", "lott")

                if lott_outcome == 1: #winning lottery
                    my_loop.addData("crdm_lott", 1)
                    my_loop.addData("crdm_lott2", "win")
                    if crdm_domain == "gain": #gain domain trial
                        if int(crdm_lott_top) != 0: #top side is winner (non-0 means some money was gained)
                            earnings.append(("lott", crdm_lott_top, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_nonzero_side, crdm_domain))
                        else: #bottom side is winner
                            earnings.append(("lott", crdm_lott_bot, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_nonzero_side, crdm_domain))
                    else: #loss domain trial
                        if int(crdm_lott_top) == 0: #top side is winner (0 means no money is lost)
                            earnings.append(("lott", crdm_lott_top, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_nonzero_side, crdm_domain))
                        else: #bottom side is winner
                            earnings.append(("lott", crdm_lott_bot, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_nonzero_side, crdm_domain))
                else: #losing lottery
                    my_loop.addData("crdm_lott", 0)
                    my_loop.addData("crdm_lott2", "lose")
                    earnings.append(("lott", 0, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_nonzero_side, crdm_domain))
        else: #no response received from Ss
            log_out(subid, utc_resp, 1, "Task_NonResp", 0, -1, crdm_domain, crdm_img.split(".")[0], crdm_lott_top, crdm_lott_bot, crdm_trials.thisTrialN+1)
    ImageComponent crdm_trial_img
      image [set every repeat] = $"images/" + crdm_img
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent crdm_trial_lott_top
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $str("$"+str(crdm_lott_top))
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    TextComponent crdm_trial_lott_bot
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $str("$"+str(crdm_lott_bot))
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    TextComponent crdm_trial_sure_amt
      letterHeight = 0.06
      pos [set every repeat] = sure_pos
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $str("$"+str(crdm_sure_amt))
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    PolygonComponent GRFX_fix
      fillColor = [0,0,0]
      lineColor = [0,0,0]
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 3
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    PolygonComponent crdm_trial_cue
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, 1.0000, -1.0000
      saveStartStop = False
      shape = circle
      size = (0.04, 0.04)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 3
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    KeyboardComponent crdm_trial_resp
      allowedKeys = "4", "5"
      correctAns = $sure_resp
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 4
      stopVal [duration (s)] = 3
      store = first key
      storeCorrect = True
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  Routine crdm_trials_iti
    CodeComponent crdm_trials_iti1_py
      Code Type = Py
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      Begin Routine:
        utc_iti = int((datetime.utcnow() - epoch).total_seconds()*1000) #output log variable for ITI

        iti_time = iti_list[my_loop.thisIndex] + delta_time #variable ITI for non-practice trials

        if crdm_trials.thisTrialN == 99: #final trial (number of trials - 1)
            continueRoutine = False #don't present ITI fixation
        else: #not final trial
            log_out(subid, utc_iti, 1, "Rand_ITIFix", -1, -1, "xxxx", "xxxxxxxxx", -1, -1, crdm_trials.thisTrialN+2)
      End Routine:
        my_loop.addData("crdm_delta_time", delta_time) #record delta time
        my_loop.addData("crdm_iti_time", iti_time) #record iti time
    PolygonComponent crdm_trials_iti1_poly
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_time
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  Routine crdm_end
    UnknownComponent crdm_end_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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    CodeComponent crdm_end_py
      Code Type = Py
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      Begin Experiment:
        task_end_text = ""
        space_text = ""
      Begin Routine:
        unique_resps = []
        unique_count = 0
        for i in task_resps:
            if i not in unique_resps:
                unique_count += 1
                unique_resps.append(i)

        task_end_text = ""
        space_text = ""
        #filter for nonresponses
        if len(task_resps) < 76 or len(conf_resps) < 76: #95% of 80 CRDM trials
            if len(task_resps) < 76:
                task_end_text = "You failed to respond to " + str(80-len(task_resps)) + " task trials and did not meet the 95% response rate requirement. \n \n The Risk & Ambiguity Task will now close."
            if len(conf_resps) < 76:
                task_end_text = "You failed to respond to both parts of " + str(80-len(conf_resps)) + " trials and did not meet the 95% response rate requirement. \n \n The Risk & Ambiguity Task will now close."
            space_text = "Press SPACE to end."
            exp_proceed = False
            my_loop.addData("crdm_subReject1", "< 95% resp rate")
            my_loop.addData("crdm_subReject1_nonresps-task", 80-len(task_resps))
            my_loop.addData("crdm_subReject1_nonresps-conf", 80-len(conf_resps))
        #filter for single-button responses
        elif unique_count < 2: #same for each exp
            task_end_text = "You provided the same response to all " + str(len(task_resps)) + " trials. \n \n You did not follow task instructions. \n \n The Risk & Ambiguity Task will now close."
            space_text = "Press SPACE to end."
            exp_proceed = False
            my_loop.addData("crdm_subReject2", "1key response")
            my_loop.addData("crdm_subReject2_key", task_resps[0])
        #filter for poor performance on CRDM catch trials (10/20 catch trials -- 0.097% of random success on 10 trials)
        elif sum(catch_trials) < 10:
            task_end_text = "Your performance on the previous trial block demonstrates you did not follow task instructions. \n \n The Risk & Ambiguity Task will now close."
            space_text = "Press SPACE to end."
            exp_proceed = False
            my_loop.addData("crdm_subReject3", "catch fail")
            my_loop.addData("crdm_subReject3_fails", 20-sum(catch_trials))
        #all CRDM task trial criterion are met
        else:
            task_end_text = "You have completed the Risk & Ambiguity Task!"
            space_text = "Press SPACE to continue."
    TextComponent crdm_end_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Risk & Ambiguity Task *
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    TextComponent crdm_end_txt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $task_end_text
      wrapWidth = 1.35
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    TextComponent crdm_end_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $space_text
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    KeyboardComponent crdm_end_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_term_check
    UnknownComponent crdm_term_check_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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    CodeComponent crdm_term_check_py
      Code Type = Py
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      Begin Routine:
        if exp_proceed == False:
            core.quit()
  Routine crdm_bonus
    CodeComponent crdm_bonus_py
      Code Type = Py
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      Begin Routine:
        #indexing examples
        #certain chosen - ("sure", 5, crdm_img, crdm_lott_top, crdm_lott_bot, -1, crdm_nonzero_side, crdm_domain)
        #lotto chosen, win top - ("lott", crdm_lott_top, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_nonzero_side, crdm_domain))
        #lotto chosen, win bottom - ("lott", crdm_lott_bot, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_nonzero_side, crdm_domain)
        #lotto chosen, lose - ("lott", 0, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_nonzero_side, crdm_domain)

        earnings_text = ""
        idx = int(random.random() * len(earnings)) #random selection of bonus trial
        choice, money, trial_img, top, bottom, outcome, nonzero_side, domain = earnings[idx]
        my_loop.addData("bonus_choice", choice) #record bonus trial choice

        #text for bonus payment screen
        if choice == "cert": ##Ss chose certain $5
            earnings_text = "In the randomly selected trial, you chose: \n \n A CERTAIN $" + str(money)
            my_loop.addData("bonus_amt", money) #record bonus trial sure amt
        else: ##Ss chose lottery
            earnings_text = "In the randomly selected trial, you chose: \n \n PLAY THE LOTTERY! \n \n You will now draw a chip from the lottery bag with these possible values. \n \n Good luck!"
    ImageComponent crdm_bonus_img
      image [set every repeat] = $"images/" + trial_img
      pos = (0.6, -0.1)
      saveStartStop = False
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent crdm_bonus_thanks_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Thank you for participating in the Risk & Ambiguity Task!
      wrapWidth = 1.5
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    TextComponent crdm_bonus_box
      letterHeight = 0.04
      pos = (-0.20, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $earnings_text
      wrapWidth = 1
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    TextComponent crdm_bonus_lott_top
      letterHeight = 0.04
      pos = (0.6, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $str("$"+str(top))
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    TextComponent crdm_bonus_lott_bot
      letterHeight = 0.04
      pos = (0.6, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $str("$"+str(bottom))
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    TextComponent crdm_bonus_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to end
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    KeyboardComponent crdm_bonus_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_instr8
    UnknownComponent crdm_instr8_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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    TextComponent crdm_instr8_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Risk & Ambiguity Task *
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    TextComponent crdm_instr8_warn_txt
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        You must answer both the initial question and confidence prompts to complete each trial. The experiment will end if you (1) miss more than 4 trials, or (2) provide responses which indicate you did not understand, or are not following, task instructions. If this happens, you will not be eligible to receive a *bonus earnings*.

        Please remain engaged throughout the experiment and provide earnest, sincere responses for each trial. Remember, your choices could help you walk away with an additional bonus ranging from \$2 to \$65, depending on the seleced *bonus earnings* trial!

        Thank you for your participation!
    TextComponent crdm_instr8_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr8_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_pract_feedback
    CodeComponent crdm_pract_feedback_py
      Code Type = Py
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      Begin Routine:
        if len(pract_key) == 0: #Ss did not respond
            crdm_msg = "NO RESPONSE"
        elif pract_sure_key: #Ss chose sure amt
            crdm_msg = "CERTAIN $" + str(crdm_sure_amt)
        else: #Ss chose lottery
            crdm_msg = "LOTTERY"
    TextComponent crdm_pract_feedback_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $crdm_msg
      wrapWidth = 1.5
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  Routine crdm_pract_conf
    CodeComponent crdm_pract_conf_py
      Code Type = Py
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      Begin Routine:
        #Ss did not respond
        if len(pract_key) == 0:
            continueRoutine = False

        #set default gray for all four response boxes
        conf1_color = [0, 0, 0]
        conf2_color = [0, 0, 0]
        conf3_color = [0, 0, 0]
        conf4_color = [0, 0, 0]
      Each Frame:
        #resp is received
        pract_conf_key = crdm_pract_conf_resp.keys
        if len(pract_conf_key) == 1:
            pract_conf_key = confkey_map[pract_conf_key[-1]]
            #not at all confident
            if pract_conf_key == "1":
                #change box color to indicate selection
                conf1_color = "darkgray"
                conf2_color = [0,0,0]
                conf3_color = [0,0,0]
                conf4_color = [0,0,0]
            #less confident
            elif pract_conf_key == "2":
                conf1_color = [0,0,0]
                conf2_color = "darkgray"
                conf3_color = [0,0,0]
                conf4_color = [0,0,0]
            #somewhat confident
            elif pract_conf_key == "3":
                conf1_color = [0,0,0]
                conf2_color = [0,0,0]
                conf3_color = "darkgray"
                conf4_color = [0,0,0]
            #very confident
            elif pract_conf_key == "4":
                conf1_color = [0,0,0]
                conf2_color = [0,0,0]
                conf3_color = [0,0,0]
                conf4_color = "darkgray"
    TextComponent crdm_pract_conf_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = How confident are you in your choice?
      wrapWidth = 1.5
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    PolygonComponent crdm_pract_conf1
      fillColor [set every frame] = $conf1_color
      lineWidth = 10
      pos = (-0.6, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent crdm_pract_conf1_txt
      letterHeight = 0.04
      pos = (-0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text:
        Not at all
        confident

        1
    PolygonComponent crdm_pract_conf2
      fillColor [set every frame] = $conf2_color
      lineWidth = 10
      pos = (-0.2, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent crdm_pract_conf2_txt
      letterHeight = 0.04
      pos = (-0.2, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text:
        Less
        confident

        2
    PolygonComponent crdm_pract_conf3
      fillColor [set every frame] = $conf3_color
      lineWidth = 10
      pos = (0.2, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent crdm_pract_conf3_txt
      letterHeight = 0.04
      pos = (0.2, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text:
        Somewhat
        confident

        3
    PolygonComponent crdm_pract_conf4
      fillColor [set every frame] = $conf4_color
      lineWidth = 10
      pos = (0.6, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent crdm_pract_conf4_txt
      letterHeight = 0.04
      pos = (0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text:
        Very
        confident

        4
    KeyboardComponent crdm_pract_conf_resp
      allowedKeys = '2', '3', 'j', 'k'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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  Routine crdm_pract_init_fix
    PolygonComponent crdm_init_fix_poly_2
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine crdm_questplus
    CodeComponent crdm_questplus_py
      Code Type = Py
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      Begin Experiment:
        #position of certain amount option
        sure_pos = []
        sure_resp = []
        crdm_msg = ""

        #stimuli positions and respective responses
        pos = [[-0.5, 0], [0.5, 0]] #left/right screen locations
        resp = ["4", "5"] #4 = left, 5 = right
      Begin Routine:
        my_loop = eval("questplus_trials")

        #random index for certain outcome position and response
        idx = random.randint(0,1)
        sure_pos = pos[idx]
        sure_resp = resp[idx]
        ado_lott_top = ""
        ado_lott_bot = ""
        ado_img = ""

        #setting important parameters based on domain (gain/loss)
        if trial_type == "gain":
            log_lik, ent, log_post, sets = g_log_lik, g_ent, g_log_post, g_sets
            mutual_info = rg.get_MI(log_lik, ent, log_post) #ricardo_gain.py
        else: #losses
            log_lik, ent, log_post, sets = l_log_lik, l_ent, l_log_post, l_sets
            mutual_info = rl.get_MI(log_lik, ent, log_post) #ricardo_loss.py


        # GET_DESIGN based on maximum Mutual Information
        idx_design = np.argmax(mutual_info)
        cur_design = sets.choice.iloc[idx_design].to_dict()

        if nonzero_side == "top": #red side of lotto
            ado_lott_top = cur_design["value_reward"] #nonzero value on top (red)
            ado_lott_bot = 0
            if cur_design["amb_level"] == 0: #risk trial
                ado_img = "risk_red_{0}.bmp".format(int(cur_design["p_reward"]*100))
            else: #ambiguity trial
                ado_img = "ambig_{0}.bmp".format(int(cur_design["amb_level"]*100))
        else: #blue side of lotto
            ado_lott_top = 0
            ado_lott_bot = cur_design["value_reward"] #nonzero value on bottom (blue)
            if cur_design["amb_level"] == 0: #risk trial
                ado_img = "risk_blue_{0}.bmp".format(int(cur_design["p_reward"]*100))
            else: #ambiguity trial
                ado_img = "ambig_{0}.bmp".format(int(cur_design["amb_level"]*100))
        ado_sure_amt = cur_design["value_null"] #sure amount
      End Routine:
        qp_key = crdm_questplus_trial_resp.keys
        qp_sure_key = crdm_questplus_trial_resp.corr
        my_loop.addData("crdm_trial_type", "questplus")

        cur_response = not qp_sure_key #flips .corr convention
        if trial_type == "gain": #gain -- ricardo_gain.py
            mutual_info, log_post = rg.update_MI(sets.choice, sets.response, cur_design, cur_response, log_lik, ent, log_post)
            post_mean = rg.get_post_mean(np.exp(log_post), sets.param)
            post_sd = rg.get_post_sd(np.exp(log_post), sets.param)
            g_log_lik, g_ent, g_log_post, g_sets = log_lik, ent, log_post, sets
        else: #loss -- ricardo_loss.py
            mutual_info, log_post = rl.update_MI(sets.choice, sets.response, cur_design, cur_response, log_lik, ent, log_post)
            post_mean = rl.get_post_mean(np.exp(log_post), sets.param)
            post_sd = rl.get_post_sd(np.exp(log_post), sets.param)
            l_log_lik, l_ent, l_log_post, l_sets = log_lik, ent, log_post, sets

        my_loop.addData("response", cur_response)
        my_loop.addData('mean_alpha', post_mean[0])
        my_loop.addData('mean_beta', post_mean[1])
        my_loop.addData('mean_gamma', post_mean[2])
        my_loop.addData('sd_alpha', post_sd[0])
        my_loop.addData('sd_beta', post_sd[1])
        my_loop.addData('sd_gamma', post_sd[2])
        my_loop.addData("lott_reward", cur_design["value_reward"])
        my_loop.addData("lott_prob", int(cur_design["p_reward"]*100))
        my_loop.addData("ambig_level", int(cur_design["amb_level"]*100))
    ImageComponent crdm_questplus_img
      image [set every repeat] = $"images/" + ado_img
      saveStartStop = False
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent crdm_questplus_trial_lott_top_txt
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $str("$"+str(ado_lott_top))
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    TextComponent crdm_questplus_trial_lott_bot_txt
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $str("$"+str(ado_lott_bot))
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    TextComponent crdm_questplus_trial_sure_amt_txt
      letterHeight = 0.06
      pos [set every repeat] = sure_pos
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text [set every repeat]:
        $str("$"+str(ado_sure_amt))
    PolygonComponent GRFX_fix3
      fillColor = [0,0,0]
      lineColor = [0,0,0]
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 3
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    PolygonComponent crdm_questplus_trial_cue
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, 1.0000, -1.0000
      saveStartStop = False
      shape = circle
      size = (0.04, 0.04)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 3
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    KeyboardComponent crdm_questplus_trial_resp
      allowedKeys = "4", "5"
      correctAns = $sure_resp
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      store = first key
      storeCorrect = True
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  Routine crdm_generatecsv
    CodeComponent crdm_generatecsv_py
      Code Type = Py
      Begin Experiment:
        import math
        import matplotlib.pyplot as plt
        import numpy as np
        import os
        import pandas as pd

        ###Functions###############

        def get_extreme(p_options,
                        domain='gain'):
            ###Obtains extreme gain/loss for each probability
            """
            Inputs:
                - p_options = list of probability values (float)
            Output:
                - dict containing highest possible gain or loss for each probability ($50 or -$50)
            """
            extr = {}
            V = Vmax #default gain domain (max gain)
            if domain == 'loss': #loss domain
                V = Vmin #assign min value (max loss)
            for p in p_options: #iterate through probability levels
                extr[p] = V #assign max value (gain) or min value (loss) for each probability
            return extr

        def get_extr_df(extr_dict,
                        domain='gain'):
            ###Create DataFrame of extreme values for gain/loss trial probabilities
            """
            Inputs:
                - extr_dict = dict containing highest possible gain or loss for each probability ($50 or -$50)
            Output:
                - Dataframe containing column of extreme values for all trials
            """
            df_app = pd.DataFrame(extr_dict.items(), #all columns names and values
                                  columns=['p_reward', 'value_reward']) #add extra columns
            Extr_df = pd.concat([empty_df, df_app], ignore_index=True)
            category = 'Extr_pos'
            if domain == 'loss':
                category = 'Extr_neg'
            Extr_df['category'] = category
            Extr_df['ambiguity'] = A_null
            return Extr_df

        def add_ambig_extr(df,
                           amb_options,
                           domain='gain'):
            ###Add ambiguity trials to df
            """
            Inputs:
                - df
                - amb_options = list of possible ambiguity values
            Output:
                - Dataframe with appended ambiguity max values
            """
            amb_dict = {amb_prob: amb_options}
            df_app = pd.DataFrame(amb_dict.items(),
                                  columns=['p_reward', 'ambiguity'])
            df_app = df_app.explode('ambiguity') #flatten ambiguity column
            df_app['category'] = df['category']
            if domain == 'gain': #gain domain
                df_app['value_reward'] = Vmax #Max gain = $50
            else: #loss domain
                df_app['value_reward'] = Vmin #Max loss = -$50
            df = pd.concat([df, df_app], ignore_index=True)
            return df

        def append_SVreward(df,
                            alpha,
                            beta,
                            domain='gain'):
            ###Calculate SV of lotteries given Ss alpha and beta
            """
            Inputs:
                - df
                - alpha
                - beta
            Output:
                - Dataframe contain new SV reward values
            """
            Amp = 1.0
            if domain == 'loss':
                Amp = -1.0
            df['SV_reward'] = (df['p_reward'] - beta * df['ambiguity']/2) * Amp * (abs(df['value_reward']))**alpha
            return df

        def append_Vsafe(df,
                         alpha,
                         beta,
                         domain='gain'):
            ###Calculate SV of safe options given Ss alpha and beta
            """
            Inputs:
                - df
                - alpha
                - beta
            Output:
                - Dataframe
            """
            Amp = 1.0
            if domain == 'loss':
                Amp = -1.0
            df['SV_New_Safe'] = 0.5 * df['SV_reward']
            df['value_lott_SE'] = Amp * (abs(df['SV_New_Safe']) / (df['p_reward'] - beta * df['ambiguity']/2))**(1/alpha)
            df['value_safe'] = Amp * (abs(df['SV_New_Safe']))**(1/alpha)
            return df

        def calculate_value_reward(df,
                                   alpha,
                                   beta,
                                   domain='gain'):
            ###Calculate value of lotteries for new SV with same SVdelta
            """
            Inputs:
                - df
                - alpha
                - beta
            Output:
                - Dataframe
            """
            new_rows = []
            for index, row in df.iterrows():
                SV = row['SV_reward']
                value_safe = row['value_safe']
                p = row['p_reward']
                A = row['ambiguity']
                if A != 0:
                    p = 0.50
                if domain == 'gain':
                    if SV < 0.0:
                        continue
                    value_reward = (SV / (p - beta * A / 2))**(1/alpha)
                    if (value_reward < 100) and (value_reward >= 0.0):
                        new_rows.append({'category': row['category'], 'SV_reward': SV, 'p_reward': p, 'ambiguity': A, 'value_safe': value_safe, 'value_reward': value_reward})
                        #calculated values are used to create new dictionary for each combination, and collected in new rows list
                        new_df = pd.DataFrame(new_rows, columns=['category', 'p_reward','ambiguity', 'value_reward', 'SV_reward', 'value_safe']) #new DF from list
                        new_df = new_df.round(2)
                else: #loss domain
                    if SV > 0.0:
                        continue
                    value_reward = -((abs(SV) / (p - beta * A / 2))**(1/alpha))
                    if (value_reward >- 100) and (value_reward <= 0.0):
                        new_rows.append({'category': row['category'], 'SV_reward': SV, 'p_reward': p, 'ambiguity': A, 'value_safe': value_safe, 'value_reward': value_reward})
                        new_df = pd.DataFrame(new_rows, columns=['category', 'p_reward', 'ambiguity', 'value_reward', 'SV_reward', 'value_safe'])
                        new_df = new_df.round(2)
            return new_df

        def determine_nonzero_side(row):
            ###Determine nonzero side of lottery
            """
            Inputs:
                - row = current row values for each column
            Output:
                - String containing "top" or "bottom"
            """
            if row['crdm_lott_top'] != 0.00: #current trial lottery top is not zero
                return 'top' #red is non-zero side
            else:
                return 'bottom' #blue is non-zero side

        def determine_image_file(row):
            ###Selects lottery image
            """
            Inputs:
                - row = current row values for each column
            Output:
                - f[0] or f[1] = risk trial image filename
            """
            if row['crdm_amb_lev'] == 0: #risk trials
                for p, prob in risk_images.items(): #p = dict key (e.g., 13), prob = dict key values (e.g., ['risk_blue_13.bmp', 'risk_red_13.bmp'])
                    if row['crdm_lott_p'] == p and row['crdm_nonzero_side'] == 'top':
                        return prob[1] #2nd idx for red
                    elif row['crdm_lott_p'] == p and row['crdm_nonzero_side'] == 'bottom':
                        return prob[0] #1st idx dict for blue
            else: #ambiguity trials
                for a, amb in amb_images.items():
                    return amb[0]

        ########################


        subid = expInfo['participant'] #subject id
        p_options = [0.13, 0.25, 0.38, 0.5, 0.75] #possible probability values (lott)
        amb_options = [0.24, 0.5, 0.74] #possible portions of probability obscured (lott)
        amb_prob = 0.5 #probability for all ambiguity trials
        A_null = 0.0 #zero ambiguity
        Vmax = 50.0 #maximum possible payment
        Vmin = -50.0 #minimum possible payment
        Vsafe_pos = 5.0 #old safe option in positive trials
        Vsafe_neg = -5.0 #old safe option in negative trials
        desired_trials = 50 #number of trials needed for each domain
        empty_df = pd.DataFrame([], columns=['category', 'p_reward', 'value_reward']) #template df

        amb_images = {} #ambiguity images filesnames
        risk_images = {} #risk images filesnames
        for img_type in ["amb_images", "risk_images"]: #flexibly obtain image filenames for ambiguity and risk trials
            if img_type == "amb_images": #ambiguity trial images
                for option in amb_options:
                    amb_images[int(option*100)] = ["ambig_{0}.bmp".format(str(int(option*100)))]
            else: #risk trial images
                for option in p_options:
                    risk_images[int(option*100)] = ["risk_blue_{0}.bmp".format(str(int(option*100))),
                                                    "risk_red_{0}.bmp".format(str(int(option*100)))]

        ###GAIN DOMAIN###
        extrpos = get_extreme(p_options) #dict of extreme gain values for each probability ($50)
        post_mean_gain = rg.get_post_mean(np.exp(g_log_post), g_sets.param) #posterior mean for gain
        alpha_pos, beta_pos = post_mean_gain[0], post_mean_gain[1] #parameters for gains
        df_pos = get_extr_df(extrpos)
        df_pos = add_ambig_extr(df_pos, amb_options)
        df_pos = append_SVreward(df_pos, alpha_pos, beta_pos) #append SV of lottery trials to df
        df_pos = append_Vsafe(df_pos, alpha_pos, beta_pos) #append SV of safe trials to df
        #safe option dataframe for merging multiple dataframes
        df_safe_pos = df_pos[['p_reward', 'ambiguity', 'SV_New_Safe', 'value_lott_SE', 'value_safe']].copy()
        #define trials of subjective equality (SE)
        df_SE_pos = df_pos[['category', 'p_reward', 'ambiguity', 'value_lott_SE', 'SV_New_Safe']].copy()
        df_SE_pos['category'] = 'SE_pos'
        df_SE_pos = df_SE_pos.rename(columns={'value_lott_SE': 'value_reward'})
        df_SE_pos['value_safe'] = df_safe_pos['value_safe']
        df_SE_pos = df_SE_pos.rename(columns={'SV_New_Safe': 'SV_reward'})
        #center around trial of subjective equality
        df_cent_pos = df_SE_pos.copy()
        df_cent_pos['category'] = 'Cent_SE_pos'
        df_adjusted_pos = df_cent_pos.copy()
        df_adjusted_pos['value_reward'] = df_adjusted_pos['value_reward'] + 2.0
        df_adjusted_neg = df_cent_pos.copy()
        df_adjusted_neg['value_reward'] = df_adjusted_neg['value_reward'] - 2.0
        df_cent_pos = pd.concat([df_cent_pos, df_adjusted_pos, df_adjusted_neg], ignore_index=True)
        df_cent_pos = append_SVreward(df_cent_pos, alpha_pos, beta_pos) #centered SE DF
        #GAIN ONLY-- filter rows with negative SV_reward values to avoid weird numbers in lottery
        df_cent_pos = df_cent_pos[df_cent_pos['SV_reward'] >= 0] #conditional statement may drop trials
        df_cent_pos = df_cent_pos.round(2)
        df_pos = df_pos.sort_values('SV_reward', ascending=False).reset_index(drop=True) #SVdiff sampling
        index = 3 #fourth ranked SV_reward
        col = 4 #SV_reward
        SV_max_pos = df_pos.iloc[index, col]
        _SV_safe = df_pos.iloc[index, col + 1]
        _delta_SV = SV_max_pos - _SV_safe #sampling here
        _delta_SV2 = 0.5 * _delta_SV # second sampling
        #GAIN -- Maximum SV Delta
        pos_df1 = df_pos[['category', 'p_reward', 'ambiguity',
                          'value_safe', 'SV_New_Safe']].copy()
        pos_df1['category'] = 'MaxSVdelta'
        pos_df1['deltaSV'] = _delta_SV
        pos_df1['SV_reward'] = pos_df1['deltaSV'] + pos_df1['SV_New_Safe']
        #GAIN -- Half-Maximum SV Delta
        pos_df2 = df_pos[['category', 'p_reward', 'ambiguity',
                          'value_safe', 'SV_New_Safe']].copy()
        pos_df2['category'] = 'half_maxSV_delta'
        pos_df2['deltaSV'] = _delta_SV2
        pos_df2['SV_reward'] = pos_df2['deltaSV'] + pos_df2['SV_New_Safe']
        #GAIN -- Minimum SV Delta
        pos_df3 = df_pos[['category', 'p_reward', 'ambiguity',
                          'value_safe', 'SV_New_Safe']].copy()
        pos_df3['category'] = 'MinSVdelta'
        pos_df3['deltaSV'] = -1.0 * _delta_SV
        pos_df3['SV_reward'] = pos_df3['deltaSV'] + pos_df3['SV_New_Safe']
        #GAIN -- Half-Minimum SV Delta
        pos_df4 = df_pos[['category', 'p_reward', 'ambiguity',
                          'value_safe', 'SV_New_Safe']].copy()
        pos_df4['category'] = 'Half_minSV_delta'
        pos_df4['deltaSV'] = -1.0 * _delta_SV2
        pos_df4['SV_reward'] = pos_df4['deltaSV'] + pos_df4['SV_New_Safe']
        #combine 4 GAIN SV Delta dfs
        pos_df = pd.concat([pos_df1, pos_df2, pos_df3, pos_df4], ignore_index=True)

        df_SVdeltas_gains = calculate_value_reward(pos_df, alpha_pos, beta_pos)
        df_Trials_gains = pd.concat([df_SVdeltas_gains, df_cent_pos], ignore_index=True)
        df_Trials_gains['SV_New_Safe'] = df_Trials_gains['value_safe']**alpha_pos
        df_Trials_gains['deltaSV'] = df_Trials_gains['SV_reward'] - df_Trials_gains['SV_New_Safe']
        columns_to_convert = ['value_reward', 'value_safe', 'SV_reward', 'deltaSV'] #convert selected columns to numeric values for rounding
        df_Trials_gains[columns_to_convert] = df_Trials_gains[columns_to_convert].apply(pd.to_numeric, errors='coerce')
        df_Trials_gains = df_Trials_gains.round(2)
        if len(df_Trials_gains) < desired_trials: #check if current number of trials is less than desired number
            trials_needed = desired_trials - len(df_Trials_gains)
            #calculate number of additional trials for each category (gains and losses)
            trials_needed_gains = math.ceil(trials_needed)  #round up to nearest integer
            additional_trials_gains = df_pos.sample(n=trials_needed_gains, replace=True) #new trials from extremes reward or loss
            df_Trials_gains = pd.concat([df_Trials_gains, additional_trials_gains], ignore_index=True) #add trials to existing DataFrame
            df_Trials_gains = df_Trials_gains.drop(columns=['value_lott_SE'])
        if len(df_Trials_gains) > desired_trials: #check if current number of trials is greater than 50
            trials_to_delete = len(df_Trials_gains) - desired_trials
            #randomly sample rows to delete
            rows_to_delete = df_Trials_gains[df_Trials_gains['category'] == 'Cent_SE_pos'].sample(n=trials_to_delete)
            df_Trials_gains = df_Trials_gains.drop(rows_to_delete.index) #remove sampled rows
        df_Trials_gains['value_reward'] = df_Trials_gains['value_reward'].apply(lambda x: round(x * 2) / 2) #round to nearest 50 cents
        df_Trials_gains['value_safe'] = df_Trials_gains['value_safe'].apply(lambda x: round(x * 2) / 2) #round to nearest 50 cents
        #update value_safe and value_reward when it's 0. Note that the SV_reward for those trials will stay as previously calculate as 0.0
        df_Trials_gains.loc[df_Trials_gains['value_safe'] == 0, 'value_safe'] = 0.5
        df_Trials_gains.loc[df_Trials_gains['value_reward'] == 0, 'value_reward'] = 0.5
        #format to match previous PsychoPy input csv and add lott_top and lott_bot values
        crdm_trials_gains = df_Trials_gains.copy()
        crdm_trials_gains['category'] = 'gain'
        crdm_trials_gains = crdm_trials_gains.sort_values('p_reward', ascending=True).reset_index(drop=True)
        crdm_trials_gains = crdm_trials_gains.drop(columns=['SV_reward', 'SV_New_Safe', 'deltaSV'])
        crdm_trials_gains['ambiguity'] = (crdm_trials_gains['ambiguity'] * 100).astype(int)
        crdm_trials_gains['p_reward'] = (crdm_trials_gains['p_reward'] * 100).astype(int)
        crdm_trials_gains = crdm_trials_gains.rename(columns={'value_safe': 'crdm_sure_amt',
                                                              'value_reward': 'crdm_lott',
                                                              'ambiguity': 'crdm_amb_lev',
                                                              'p_reward': 'crdm_lott_p',
                                                              'category': 'crdm_domain'})
        crdm_trials_gains['crdm_sure_p'] = 100
        column_order = ['crdm_sure_amt', 'crdm_sure_p', 'crdm_lott', 'crdm_lott_p', 'crdm_amb_lev', 'crdm_domain'] #reordering columns
        crdm_trials_gains = crdm_trials_gains[column_order]
        crdm_trials_gains = crdm_trials_gains.sort_values(by=['crdm_lott_p', 'crdm_amb_lev'], ascending=[True, True])
        zero_ambiguity_rows = crdm_trials_gains[crdm_trials_gains['crdm_amb_lev'] == 0] #find rows with zero 'crdm_amb_lev'
        non_zero_ambiguity_rows = crdm_trials_gains[crdm_trials_gains['crdm_amb_lev'] != 0] #find rows with nonzero 'crdm_amb_lev'
        crdm_trials_gains = pd.concat([zero_ambiguity_rows, non_zero_ambiguity_rows], ignore_index=True) #join zero ambiguity trials first
        random_assignments = np.random.choice(['crdm_lott_top', 'crdm_lott_bot'], size=len(crdm_trials_gains))
        crdm_trials_gains['crdm_lott_top'] = np.where(random_assignments == 'crdm_lott_top', crdm_trials_gains['crdm_lott'], 0)
        crdm_trials_gains['crdm_lott_bot'] = np.where(random_assignments == 'crdm_lott_bot', crdm_trials_gains['crdm_lott'], 0)
        column_order = ['crdm_sure_amt', 'crdm_sure_p', 'crdm_lott_top', 'crdm_lott_bot', 'crdm_lott_p', 'crdm_amb_lev', 'crdm_domain']
        crdm_trials_gain = crdm_trials_gains[column_order]


        ###LOSS DOMAIN###
        extrneg = get_extreme(p_options, domain='loss') #dict of extreme loss values for each probability
        post_mean_loss = rl.get_post_mean(np.exp(l_log_post), l_sets.param) #posterior mean for loss
        alpha_neg, beta_neg = post_mean_loss[0], post_mean_loss[1] #parameters for losses
        df_neg = get_extr_df(extrneg, domain='loss')
        df_neg = add_ambig_extr(df_neg, amb_options, domain='loss')
        df_neg = append_SVreward(df_neg, alpha_neg, beta_neg, domain='loss')
        df_neg = append_Vsafe(df_neg, alpha_neg, beta_neg, domain='loss')
        #safe option dataframe for merging multiple dataframes
        df_safe_neg = df_neg[['p_reward', 'ambiguity', 'SV_New_Safe', 'value_lott_SE', 'value_safe']].copy()
        #define trials of subjective equality (SE)
        df_SE_neg = df_neg[['category', 'p_reward', 'ambiguity', 'value_lott_SE', 'SV_New_Safe']].copy()
        df_SE_neg['category'] = 'SE_neg'
        df_SE_neg = df_SE_neg.rename(columns={'value_lott_SE': 'value_reward'})
        df_SE_neg['value_safe'] = df_safe_neg['value_safe']
        df_SE_neg = df_SE_neg.rename(columns={'SV_New_Safe': 'SV_reward'})
        ##center around trial of subjective equality
        df_cent_neg = df_SE_neg.copy()
        df_cent_neg['category'] = 'Cent_SE_neg'
        df1_adjusted_pos = df_cent_neg.copy()
        df1_adjusted_pos['value_reward'] = df1_adjusted_pos['value_reward'] + 2.0
        df1_adjusted_neg = df_cent_neg.copy()
        df1_adjusted_neg['value_reward'] = df1_adjusted_neg['value_reward'] - 2.0
        df_cent_neg = pd.concat([df_cent_neg, df1_adjusted_pos, df1_adjusted_neg], ignore_index=True)
        df_cent_neg = append_SVreward(df_cent_neg, alpha_neg, beta_neg, domain='loss')
        #SVdiff sampling
        df_neg = df_neg.sort_values('SV_reward', ascending=True).reset_index(drop=True)
        neg_index = 4 #fourth ranked SV_reward
        neg_col = 4 #SV_reward
        SV_min_neg = df_neg.iloc[neg_index, neg_col]
        neg_SV_safe = df_neg.iloc[neg_index, neg_col + 1]
        neg_delta_SV = SV_min_neg - neg_SV_safe
        neg_delta_SV2 = 0.5 * neg_delta_SV
        #LOSS -- Maximum SV Delta
        neg_df1 = df_neg[['category', 'p_reward', 'ambiguity',
                          'value_safe', 'SV_New_Safe']].copy()
        neg_df1['category'] = 'MaxSVdelta_Loss'
        neg_df1['deltaSV'] = neg_delta_SV
        neg_df1['SV_reward'] = neg_df1['deltaSV'] + neg_df1['SV_New_Safe']
        #LOSS -- Half-Maximum SV Delta
        neg_df2 = df_neg[['category', 'p_reward', 'ambiguity',
                          'value_safe', 'SV_New_Safe']].copy()
        neg_df2['category'] = 'Neg_Half_maxSV_delta'
        neg_df2['deltaSV'] = neg_delta_SV2
        neg_df2['SV_reward'] = neg_df2['deltaSV'] + neg_df2['SV_New_Safe']
        #LOSS -- Minimum SV Delta
        neg_df3 = df_neg[['category', 'p_reward', 'ambiguity',
                          'value_safe', 'SV_New_Safe']].copy()
        neg_df3['category'] = 'MinSVdelta'
        neg_df3['deltaSV'] = -1.0 * neg_delta_SV
        neg_df3['SV_reward'] = neg_df3['deltaSV'] + neg_df3['SV_New_Safe']
        #LOSS -- Half-Minimum SV Delta
        neg_df4 = df_neg[['category', 'p_reward', 'ambiguity',
                          'value_safe', 'SV_New_Safe']].copy()
        neg_df4['category'] = 'Neg_Half_minSV_delta'
        neg_df4['deltaSV'] = -1.0 * neg_delta_SV2
        neg_df4['SV_reward'] = neg_df4['deltaSV'] + neg_df4['SV_New_Safe']
        #merge all delta LOSS dfs
        neg_df = pd.concat([neg_df1, neg_df2, neg_df3, neg_df4], ignore_index=True)

        df_SVdeltas_losses =  calculate_value_reward(neg_df, alpha_neg, beta_neg, domain='loss')
        df_Trials_losses = pd.concat([df_SVdeltas_losses, df_cent_neg], ignore_index=True)
        df_Trials_losses['SV_New_Safe'] = -abs(df_Trials_losses['value_safe'])**alpha_neg
        df_Trials_losses['deltaSV'] = df_Trials_losses['SV_reward'] - df_Trials_losses['SV_New_Safe']
        columns_to_convert = ['value_reward', 'value_safe', 'SV_reward']
        df_Trials_losses[columns_to_convert] = df_Trials_losses[columns_to_convert].apply(pd.to_numeric, errors='coerce')
        df_Trials_losses = df_Trials_losses.round(2)
        if len(df_Trials_losses) < desired_trials:
            trials_needed = desired_trials - len(df_Trials_losses)
            trials_needed_losses = math.floor(trials_needed)
            additional_trials_losses = df_neg.sample(n=trials_needed_gains, replace=True)
            df_Trials_losses = pd.concat([df_Trials_losses, additional_trials_losses], ignore_index=True)
            df_Trials_losses = df_Trials_losses.drop(columns=['value_lott_SE'])
        if len(df_Trials_losses) > desired_trials:
            trials_to_delete = len(df_Trials_losses) - desired_trials
            rows_to_delete = df_Trials_losses[df_Trials_losses['category'] == 'Cent_SE_neg'].sample(n=trials_to_delete)
            df_Trials_losses = df_Trials_losses.drop(rows_to_delete.index)
        df_Trials_losses = df_Trials_losses.reset_index(drop=True)
        df_Trials_losses['value_reward'] = df_Trials_losses['value_reward'].apply(lambda x: round(x * 2) / 2)
        df_Trials_losses['value_safe'] = df_Trials_losses['value_safe'].apply(lambda x: round(x * 2) / 2)
        df_Trials_losses.loc[df_Trials_losses['value_safe'] == 0, 'value_safe'] = -0.5
        df_Trials_losses.loc[df_Trials_losses['value_reward'] == 0, 'value_reward'] = -0.5
        #format to match previous PsychoPy input csv and add lott_top and lott_bot values
        crdm_trials_losses = df_Trials_losses.copy()
        crdm_trials_losses = crdm_trials_losses.sort_values('p_reward', ascending=True).reset_index(drop=True)
        crdm_trials_losses['category'] = 'loss'
        crdm_trials_losses = crdm_trials_losses.drop(columns=['SV_reward', 'SV_New_Safe', 'deltaSV'])
        crdm_trials_losses['ambiguity'] = (crdm_trials_losses['ambiguity'] * 100).astype(int)
        crdm_trials_losses['p_reward'] = (crdm_trials_losses['p_reward'] * 100).astype(int)
        crdm_trials_losses = crdm_trials_losses.rename(columns={'value_safe': 'crdm_sure_amt',
                                                                'value_reward': 'crdm_lott',
                                                                'ambiguity': 'crdm_amb_lev',
                                                                'p_reward': 'crdm_lott_p',
                                                                'category': 'crdm_domain'})
        crdm_trials_losses['crdm_sure_p'] = 100
        column_order = ['crdm_sure_amt', 'crdm_sure_p', 'crdm_lott', 'crdm_lott_p', 'crdm_amb_lev', 'crdm_domain'] #reordering columns
        crdm_trials_losses = crdm_trials_losses[column_order]
        crdm_trials_losses = crdm_trials_losses.sort_values(by=['crdm_lott_p', 'crdm_amb_lev'], ascending=[True,True])
        zero_ambiguity_rows_loss = crdm_trials_losses[crdm_trials_losses['crdm_amb_lev'] == 0]
        non_zero_ambiguity_rows_loss = crdm_trials_losses[crdm_trials_losses['crdm_amb_lev'] != 0]
        crdm_trials_losses = pd.concat([zero_ambiguity_rows_loss, non_zero_ambiguity_rows_loss], ignore_index=True)
        random_assignments = np.random.choice(['crdm_lott_top', 'crdm_lott_bot'], size=len(crdm_trials_losses))
        crdm_trials_losses['crdm_lott_top'] = np.where(random_assignments == 'crdm_lott_top', crdm_trials_losses['crdm_lott'], 0)
        crdm_trials_losses['crdm_lott_bot'] = np.where(random_assignments == 'crdm_lott_bot', crdm_trials_losses['crdm_lott'], 0)
        column_order = ['crdm_sure_amt', 'crdm_sure_p', 'crdm_lott_top', 'crdm_lott_bot', 'crdm_lott_p', 'crdm_amb_lev', 'crdm_domain']
        crdm_trials_loss = crdm_trials_losses[column_order]


        #Joining GAIN & LOSS DataFrames and formatting for trial input CSV
        crdm_trials = pd.concat([crdm_trials_gain, crdm_trials_loss], ignore_index=True)
        crdm_trials['crdm_nonzero_side'] = crdm_trials.apply(determine_nonzero_side, axis=1) #create "crdm_nonzero_side
        crdm_trials['crdm_img'] = crdm_trials.apply(determine_image_file, axis=1) #create 'crdm_img' column
        column_order = ['crdm_sure_amt', 'crdm_sure_p', 'crdm_lott_top', 'crdm_lott_bot', 'crdm_lott_p', 'crdm_amb_lev', 'crdm_domain', 'crdm_img', 'crdm_nonzero_side']
        crdm_trials = crdm_trials[column_order]

        #saving adaptive CSV to subject-specific folder
        crdm_trials_csv = 'data/{0}/session{1}/{0}-S{1}_ADOtrials.csv'.format(subid, expInfo['session']) #csv location/format
        crdm_trials.to_csv(crdm_trials_csv, float_format='%.2f', index=False) #saving csv
  Routine crdm_qp_feedback
    CodeComponent crdm_QP_FB_py
      Code Type = Py
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      Begin Routine:
        if len(qp_key) == 0: #Ss did not respond
            crdm_msg = "NO RESPONSE"
        elif qp_sure_key: #Ss chose sure amt
            crdm_msg = "CERTAIN $" + str(cur_design["value_null"])
        else: #Ss chose lottery
            crdm_msg = "LOTTERY"
    TextComponent crdm_QP_FB_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $crdm_msg
      wrapWidth = 1.5
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  Routine crdm_QP_instr
    TextComponent crdm_QP_instr_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Risk & Ambiguity Task *
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    TextComponent crdm_QP_instr_txt
      letterHeight = 0.04
      pos = (0, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        Now that you've practiced, we'll begin the first section of the task.

        You will have 4 seconds to consider and 3 seconds to respond for each trial. Please make your choice when the green circle appears on the screen.
    TextComponent crdm_QP_instr_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to begin.
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    KeyboardComponent crdm_QP_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_instr6
    TextComponent crdm_instr6_txt
      letterHeight = 0.04
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        When the green circle appears, use the color buttons on the response pad to indicate your choice:

        Press YELLOW to select the left option
        Press GREEN to select the right option
    ImageComponent crdm_instr6_img
      image = images/response_box1-2.png
      pos = (0, -0.1)
      saveStartStop = False
      size = (0.6, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent crdm_instr6_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr6_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_instr7
    TextComponent crdm_instr7_txt
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.35
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      text:
        After each choice, you will be asked to rate your choice confidence.
        1 indicates you couldn't decide which option you preferred and chose at random, while 4 indicates total certainty in your choice. Use the number keys on the response pad to indicate your confidence:
    ImageComponent crdm_instr7_img
      image = images/response_box1-2.png
      pos = (0, -0.15)
      saveStartStop = False
      size = (0.6, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent crdm_instr7_left_txt
      letterHeight = 0.035
      pos = (-0.575, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        1 - Not at all confident
         2 - Less confident
    TextComponent crdm_instr7_right_txt
      letterHeight = 0.035
      pos = (0.575, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        3 - Somewhat confident
         4 - Very confident
    TextComponent crdm_instr7_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr7_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_pract_instr2
    TextComponent crdm_pract_instr_name_txt_2
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Risk & Ambiguity Task *
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    TextComponent crdm_pract_instr_txt_2
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        In this second section, you will now be asked to provide a confidence rating after your choice.

        When the green circle appears, indicate your decision by pressing YELLOW for the left option and GREEN for the right option. Next, you will rate your choice confidence. Please be sure to answer both the task and confidence questions!

        Let's practice!
    TextComponent crdm_pract_instr_space_txt_2
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to begin.
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    KeyboardComponent crdm_pract_instr_key_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_pract1_trial
    CodeComponent crdm_pract1_trial_py
      Code Type = Py
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      Begin Experiment:
        #position of certain amount option
        sure_pos = []
        sure_resp = []
        crdm_msg = ""

        #stimuli positions and respective responses
        #left/right screen locations
        pos = [[-0.5, 0], [0.5, 0]]
        resp = ["4", "5"] #4 = left, 5 = right
      Begin Routine:
        my_loop = eval(practice_loop1_name)

        #random index for certain outcome position and response
        idx = random.randint(0,1)
        sure_pos = pos[idx]
        sure_resp = resp[idx]
      End Routine:
        pract_key = crdm_pract1_trial_resp.keys
        pract_sure_key = crdm_pract1_trial_resp.corr

        my_loop.addData("crdm_trial_type", "practice1")
    ImageComponent crdm_pract1_trial_img
      image [set every repeat] = $"images/" + crdm_img
      saveStartStop = False
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent crdm_pract1_trial_lott_top_txt
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $str("$"+str(crdm_lott_top))
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    TextComponent crdm_pract1_trial_lott_bot_txt
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $str("$"+str(crdm_lott_bot))
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    TextComponent crdm_pract1_trial_sure_amt_txt
      letterHeight = 0.06
      pos [set every repeat] = sure_pos
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text [set every repeat]:
        $str("$"+str(crdm_sure_amt))
    PolygonComponent GRFX_fix4
      fillColor = [0,0,0]
      lineColor = [0,0,0]
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 3
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    PolygonComponent crdm_pract1_trial_cue
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, 1.0000, -1.0000
      saveStartStop = False
      shape = circle
      size = (0.04, 0.04)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 3
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    KeyboardComponent crdm_pract1_trial_resp
      allowedKeys = "4", "5"
      correctAns = $sure_resp
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 4
      stopVal [duration (s)] = 3
      store = first key
      storeCorrect = True
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Flow
  Routine crdm_instr1
  Routine crdm_instr2
  Routine crdm_instr3
  Routine crdm_instr4
  Routine crdm_instr5
  Routine crdm_instr6
  Routine crdm_instr7
  Routine crdm_pract_instr
  Routine crdm_pract_init_fix
  LoopInitiator crdm_pract1_trials loopType="TrialHandler"
    conditionsFile = crdm_practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'crdm_sure_amt': 5, 'crdm_sure_p': 100, 'crdm_lott_top': 20, 'crdm_lott_bot': 0, 'crdm_lott_p': 13, 'crdm_amb_lev': 0, 'crdm_domain': 'gain', 'crdm_img': 'risk_red_13.bmp', 'crdm_win_side': 'top'},
      {'crdm_sure_amt': 5, 'crdm_sure_p': 100, 'crdm_lott_top': 0, 'crdm_lott_bot': 50, 'crdm_lott_p': 25, 'crdm_amb_lev': 0, 'crdm_domain': 'gain', 'crdm_img': 'risk_blue_25.bmp', 'crdm_win_side': 'bottom'},
      {'crdm_sure_amt': 5, 'crdm_sure_p': 100, 'crdm_lott_top': 40, 'crdm_lott_bot': 0, 'crdm_lott_p': 50, 'crdm_amb_lev': 74, 'crdm_domain': 'gain', 'crdm_img': 'ambig_74.bmp', 'crdm_win_side': 'top'},
      {'crdm_sure_amt': -5, 'crdm_sure_p': 100, 'crdm_lott_top': 0, 'crdm_lott_bot': -8, 'crdm_lott_p': 75, 'crdm_amb_lev': 0, 'crdm_domain': 'loss', 'crdm_img': 'risk_blue_75.bmp', 'crdm_win_side': 'bottom'},
      {'crdm_sure_amt': -5, 'crdm_sure_p': 100, 'crdm_lott_top': -20, 'crdm_lott_bot': 0, 'crdm_lott_p': 75, 'crdm_amb_lev': 0, 'crdm_domain': 'loss', 'crdm_img': 'risk_red_75.bmp', 'crdm_win_side': 'top'},
      {'crdm_sure_amt': -5, 'crdm_sure_p': 100, 'crdm_lott_top': 0, 'crdm_lott_bot': -40, 'crdm_lott_p': 75, 'crdm_amb_lev': 0, 'crdm_domain': 'loss', 'crdm_img': 'risk_blue_75.bmp', 'crdm_win_side': 'bottom'}]
    Routine crdm_pract1_trial
    Routine crdm_pract_feedback
  LoopTerminator crdm_pract1_trials
  Routine crdm_QP_instr
  LoopInitiator questplus_trials loopType="TrialHandler"
    conditionsFile = questplus_trials.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('trial_type', 'gain'), ('nonzero_side', 'top')]),
      OrderedDict([('trial_type', 'gain'), ('nonzero_side', 'bottom')]),
      OrderedDict([('trial_type', 'gain'), ('nonzero_side', 'top')]),
      OrderedDict([('trial_type', 'gain'), ('nonzero_side', 'bottom')]),
      OrderedDict([('trial_type', 'gain'), ('nonzero_side', 'top')]),
      OrderedDict([('trial_type', 'gain'), ('nonzero_side', 'bottom')]),
      OrderedDict([('trial_type', 'gain'), ('nonzero_side', 'top')]),
      OrderedDict([('trial_type', 'gain'), ('nonzero_side', 'bottom')]),
      OrderedDict([('trial_type', 'gain'), ('nonzero_side', 'top')]),
      OrderedDict([('trial_type', 'gain'), ('nonzero_side', 'bottom')]),
      OrderedDict([('trial_type', 'gain'), ('nonzero_side', 'top')]),
      OrderedDict([('trial_type', 'gain'), ('nonzero_side', 'bottom')]),
      OrderedDict([('trial_type', 'gain'), ('nonzero_side', 'top')]),
      OrderedDict([('trial_type', 'gain'), ('nonzero_side', 'bottom')]),
      OrderedDict([('trial_type', 'gain'), ('nonzero_side', 'top')]),
      OrderedDict([('trial_type', 'gain'), ('nonzero_side', 'bottom')]),
      OrderedDict([('trial_type', 'gain'), ('nonzero_side', 'top')]),
      OrderedDict([('trial_type', 'gain'), ('nonzero_side', 'bottom')]),
      OrderedDict([('trial_type', 'gain'), ('nonzero_side', 'top')]),
      OrderedDict([('trial_type', 'gain'), ('nonzero_side', 'bottom')]),
      OrderedDict([('trial_type', 'loss'), ('nonzero_side', 'top')]),
      OrderedDict([('trial_type', 'loss'), ('nonzero_side', 'bottom')]),
      OrderedDict([('trial_type', 'loss'), ('nonzero_side', 'top')])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
    Routine crdm_questplus
    Routine crdm_qp_feedback
  LoopTerminator questplus_trials
  Routine crdm_generatecsv
  Routine crdm_pract_instr2
  Routine crdm_pract_init_fix
  LoopInitiator crdm_pract2_trials loopType="TrialHandler"
    conditionsFile = crdm_practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'crdm_sure_amt': 5, 'crdm_sure_p': 100, 'crdm_lott_top': 20, 'crdm_lott_bot': 0, 'crdm_lott_p': 13, 'crdm_amb_lev': 0, 'crdm_domain': 'gain', 'crdm_img': 'risk_red_13.bmp', 'crdm_win_side': 'top'},
      {'crdm_sure_amt': 5, 'crdm_sure_p': 100, 'crdm_lott_top': 0, 'crdm_lott_bot': 50, 'crdm_lott_p': 25, 'crdm_amb_lev': 0, 'crdm_domain': 'gain', 'crdm_img': 'risk_blue_25.bmp', 'crdm_win_side': 'bottom'},
      {'crdm_sure_amt': 5, 'crdm_sure_p': 100, 'crdm_lott_top': 40, 'crdm_lott_bot': 0, 'crdm_lott_p': 50, 'crdm_amb_lev': 74, 'crdm_domain': 'gain', 'crdm_img': 'ambig_74.bmp', 'crdm_win_side': 'top'},
      {'crdm_sure_amt': -5, 'crdm_sure_p': 100, 'crdm_lott_top': 0, 'crdm_lott_bot': -8, 'crdm_lott_p': 75, 'crdm_amb_lev': 0, 'crdm_domain': 'loss', 'crdm_img': 'risk_blue_75.bmp', 'crdm_win_side': 'bottom'},
      {'crdm_sure_amt': -5, 'crdm_sure_p': 100, 'crdm_lott_top': -20, 'crdm_lott_bot': 0, 'crdm_lott_p': 75, 'crdm_amb_lev': 0, 'crdm_domain': 'loss', 'crdm_img': 'risk_red_75.bmp', 'crdm_win_side': 'top'},
      {'crdm_sure_amt': -5, 'crdm_sure_p': 100, 'crdm_lott_top': 0, 'crdm_lott_bot': -40, 'crdm_lott_p': 75, 'crdm_amb_lev': 0, 'crdm_domain': 'loss', 'crdm_img': 'risk_blue_75.bmp', 'crdm_win_side': 'bottom'}]
    Routine crdm_pract_trial
    Routine crdm_pract_feedback
    Routine crdm_pract_conf
    Routine crdm_pract_iti
  LoopTerminator crdm_pract2_trials
  Routine crdm_trial_instr
  Routine crdm_init_fix
  LoopInitiator crdm_trials loopType="TrialHandler"
    conditionsFile = $crdm_trials_csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('crdm_sure_amt', 9.0), ('crdm_sure_p', 100), ('crdm_lott_top', 0.0), ('crdm_lott_bot', 53.5), ('crdm_lott_p', 13), ('crdm_amb_lev', 0), ('crdm_domain', 'gain'), ('crdm_img', 'risk_blue_13.bmp'), ('crdm_win_side', 'bottom')]),
      OrderedDict([('crdm_sure_amt', 9.0), ('crdm_sure_p', 100), ('crdm_lott_top', 30.5), ('crdm_lott_bot', 0.0), ('crdm_lott_p', 13), ('crdm_amb_lev', 0), ('crdm_domain', 'gain'), ('crdm_img', 'risk_red_13.bmp'), ('crdm_win_side', 'top')]),
      OrderedDict([('crdm_sure_amt', 9.0), ('crdm_sure_p', 100), ('crdm_lott_top', 70.5), ('crdm_lott_bot', 0.0), ('crdm_lott_p', 13), ('crdm_amb_lev', 0), ('crdm_domain', 'gain'), ('crdm_img', 'risk_red_13.bmp'), ('crdm_win_side', 'top')]),
      OrderedDict([('crdm_sure_amt', 9.0), ('crdm_sure_p', 100), ('crdm_lott_top', 32.5), ('crdm_lott_bot', 0.0), ('crdm_lott_p', 13), ('crdm_amb_lev', 0), ('crdm_domain', 'gain'), ('crdm_img', 'risk_red_13.bmp'), ('crdm_win_side', 'top')]),
      OrderedDict([('crdm_sure_amt', 9.0), ('crdm_sure_p', 100), ('crdm_lott_top', 0.0), ('crdm_lott_bot', 34.5), ('crdm_lott_p', 13), ('crdm_amb_lev', 0), ('crdm_domain', 'gain'), ('crdm_img', 'risk_blue_13.bmp'), ('crdm_win_side', 'bottom')]),
      OrderedDict([('crdm_sure_amt', 13.5), ('crdm_sure_p', 100), ('crdm_lott_top', 17.0), ('crdm_lott_bot', 0.0), ('crdm_lott_p', 25), ('crdm_amb_lev', 0), ('crdm_domain', 'gain'), ('crdm_img', 'risk_red_25.bmp'), ('crdm_win_side', 'top')])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
    Routine crdm_trial
    Routine crdm_feedback
    Routine crdm_conf
    Routine crdm_trials_iti
  LoopTerminator crdm_trials
  Routine crdm_bonus
