PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Data filename = u'data/%s/session%s/%s_S%s_%s' % (expInfo['participant'], expInfo['session'], expInfo['participant'], expInfo['session'], expInfo['date'])
  Experiment info = {'participant': 'NIH', 'session': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2022.2.4
  Window size (pixels) = [1728, 1117]
  expName = CRDM_ICR
  keyboardBackend = Pyglet
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Routines
  Routine crdm_instr1
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    CodeComponent crdm_instr1_py
      Code Type = Py
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      Before Experiment:
        ###code written by Mandy Renfro (2023)###
        import random
        import os
        exp_proceed = True
        earnings = []

        import ricardo_gain as rg
        import ricardo_loss as rl
        #ADO Step 0
        g_log_lik, g_ent, g_log_post, g_sets = rg.step0() #gains
        l_log_lik, l_ent, l_log_post, l_sets = rl.step0() #losses

        confkey_map = {"2": "1", "3": "2", "j": "3", "k": "4", None: None} #for Cedrus box code mapping
      Begin Experiment:
        import os
        from datetime import datetime
        subid = expInfo["participant"]
        epoch = datetime.utcfromtimestamp(0)

        if not os.path.exists("data/{0}".format(subid)): #does subject exist
            os.mkdir("data/{0}".format(subid))
        if not os.path.exists("data/{0}/session{1}".format(subid, expInfo["session"])): #does session exist
            os.mkdir("data/{0}/session{1}".format(subid, expInfo["session"]))

        if os.path.exists("data/{0}/session{1}/session.log".format(subid, expInfo["session"])):
            os.remove("data/{0}/session{1}/session.log".format(subid, expInfo["session"]))

        def log_out(subid, *args):
            # "a" is append
            # "w" overwrites whatever previously existed
            with open("data/{0}/session{1}/session.log".format(subid, expInfo["session"]), "a") as f:
                for i in args:
                    f.write(str(i)+ "\t")
                f.write("\n")

        utc_start = int((datetime.utcnow() - epoch).total_seconds()*1000)
        log_out(subid, utc_start, 0, "log starts", "Task", "Conf", "Domain", "Stim", "Lott_Top", "Lott_Bot", "Trialx")
      Begin Routine:
        #provides specific loop names for each of two interations of CRDM
        #to provide flexibility of crdm_pract_trial and crdm_trial routines
        practice_loop_name = "crdm_pract_trials"
        loop_name = "crdm_trials"
    TextComponent crdm_instr1_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Risk & Ambiguity Task *
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    TextComponent crdm_instr1_txt
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        In this decision making task, you will be asked to make economic choices between:


        - Gaining/losing a certain amount
        OR
        - Playing a lottery for the chance to win a larger gain or smaller loss
    TextComponent crdm_instr1_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_instr2
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    TextComponent crdm_instr2_lottname_txt
      letterHeight = 0.05
      pos = (-0.2, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = *Playing the Lottery*
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    TextComponent crdm_instr2_txt
      letterHeight = 0.04
      pos = (-0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        The lottery consists of an imaginary bag containing 100 poker chips, some red and some blue. To play, you pull a random chip from the bag.

        The figure on the right represents the proportion of blue and red chips in the imaginary bag.

        In this example, most chips are blue (75 of 100) and fewer are red (25 of 100).
    ImageComponent crdm_instr2_img
      image = images/risk_blue_75.bmp
      pos = (0.6, 0)
      saveStartStop = False
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent crdm_instr2_lott0_txt
      letterHeight = 0.04
      pos = (0.6, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$0
      wrapWidth = 1.5
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    TextComponent crdm_instr2_lott20_txt
      letterHeight = 0.04
      pos = (0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$20
      wrapWidth = 1.5
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    TextComponent crdm_instr2_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_instr3
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    TextComponent crdm_instr3_lottname_txt
      letterHeight = 0.05
      pos = (-0.2, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = *Playing the Lottery*
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    TextComponent crdm_instr3_txt
      letterHeight = 0.04
      pos = (-0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Given information about the number of blue and red chips in the bag, you can decide whether you would prefer a certain monetary outcome or if you would rather play the lottery for a chance to win a different outcome

        In this example, you have a 75% chance of pulling a blue chip and winning \$20. Conversely, you have a 25% chance of pulling a red chip and receiving \$0.

        The value for each color will change from bag to bag. Read the \$ amount above the red and below the blue to know the value of each chip color.
    ImageComponent crdm_instr3_img
      image = images/risk_blue_75.bmp
      pos = (0.6, 0)
      saveStartStop = False
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent crdm_instr3_lott0_txt
      letterHeight = 0.04
      pos = (0.6, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$0
      wrapWidth = 1.5
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    TextComponent crdm_instr3_lott20_txt
      letterHeight = 0.04
      pos = (0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$20
      wrapWidth = 1.5
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    TextComponent crdm_instr3_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr3_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_instr4
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    TextComponent crdm_instr4_lottname_txt
      letterHeight = 0.05
      pos = (-0.2, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = *Playing the Lottery*
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    TextComponent crdm_instr4_txt
      letterHeight = 0.04
      pos = (-0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        For some lotteries, information about the contents of the bag may be partially hidden.

        In this example, the bag has at least 25 blue chips and 25 red chips. However, the color of the remaining 50 chips is unknown. The remaining 50 chips could be all red, all blue, or any combination of the two.
    ImageComponent crdm_instr4_img
      image = images/ambig_50.bmp
      pos = (0.6, 0)
      saveStartStop = False
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent crdm_instr4_lott0_txt
      letterHeight = 0.04
      pos = (0.6, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$0
      wrapWidth = 1.5
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    TextComponent crdm_instr4_lott20_txt
      letterHeight = 0.04
      pos = (0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$20
      wrapWidth = 1.5
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    TextComponent crdm_instr4_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr4_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_instr5
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    TextComponent crdm_instr5_txt
      letterHeight = 0.035
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = The lottery bag will appear in the center of the screen. The certain dollar amount will be presented on either the right or left side of the bag. In this example, the certain \$5 would be the left option, and the lottery would be the right option:
      wrapWidth = 1.5
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    ImageComponent crdm_instr5_img
      image = images/risk_blue_75.bmp
      pos = (0, -0.05)
      saveStartStop = False
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent crdm_instr5_lott_top_txt
      letterHeight = 0.04
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$0
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    TextComponent crdm_instr5_lott_bot_txt
      letterHeight = 0.04
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$20
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    TextComponent crdm_instr5_sure_txt
      letterHeight = 0.06
      pos = (-0.5, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$5
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    TextComponent crdm_instr5_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr5_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_pract_instr
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    TextComponent crdm_pract_instr_name_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Risk & Ambiguity Task *
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    TextComponent crdm_pract_instr_txt
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        Let's practice!

        When the green circle appears, indicate your decision by pressing YELLOW for the left option and GREEN for the right option. Next, you will rate your choice confidence.

        Please be sure to answer both the task and confidence prompts or the trial will be considered incomplete.
    TextComponent crdm_pract_instr_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to begin.
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    KeyboardComponent crdm_pract_instr_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_init_fix
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    CodeComponent crdm_init_fix_py
      Code Type = Py
      Begin Routine:
        utc_iti = int((datetime.utcnow() - epoch).total_seconds()*1000)
        log_out(subid, utc_iti, 1, "Rand_ITIFix", -1, -1, "xxxx", "xxxxxxxxx", -1, -1, 1)
    PolygonComponent crdm_init_fix_poly
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine crdm_pract_trial
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    CodeComponent crdm_pract_trial_py
      Code Type = Py
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      Begin Experiment:
        #position of certain amount option
        sure_pos = []
        sure_resp = []
        crdm_msg = ""

        #stimuli positions and respective responses
        #left/right screen locations
        pos = [[-0.5, 0], [0.5, 0]]
        resp = ["4", "5"] #4 = left, 5 = right
      Begin Routine:
        my_loop = eval(practice_loop_name)

        #random index for certain outcome position and response
        idx = random.randint(0,1)
        sure_pos = pos[idx]
        sure_resp = resp[idx]
      End Routine:
        pract_key = crdm_pract_trial_resp.keys
        pract_sure_key = crdm_pract_trial_resp.corr

        my_loop.addData("crdm_trial_type", "practice")
    ImageComponent crdm_pract_trial_img
      image [set every repeat] = $"images/" + crdm_img
      saveStartStop = False
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent crdm_pract_trial_lott_top_txt
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $str("$"+str(crdm_lott_top))
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    TextComponent crdm_pract_trial_lott_bot_txt
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $str("$"+str(crdm_lott_bot))
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    TextComponent crdm_pract_trial_sure_amt_txt
      letterHeight = 0.06
      pos [set every repeat] = sure_pos
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text [set every repeat]:
        $str("$"+str(crdm_sure_amt))
    PolygonComponent GRFX_fix2
      fillColor = [0,0,0]
      lineColor = [0,0,0]
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 3
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    PolygonComponent crdm_pract_trial_cue
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, 1.0000, -1.0000
      saveStartStop = False
      shape = circle
      size = (0.04, 0.04)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 3
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    KeyboardComponent crdm_pract_trial_resp
      allowedKeys = "4", "5"
      correctAns = $sure_resp
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 4
      stopVal [duration (s)] = 3
      store = first key
      storeCorrect = True
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  Routine crdm_feedback
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    CodeComponent crdm_feedback_py
      Code Type = Py
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      Begin Routine:
        utc_fb = int((datetime.utcnow() - epoch).total_seconds()*1000)

        #Ss did not respond
        if len(key) == 0:
            crdm_msg = "No Response"
            log_out(subid, utc_fb, 1, "Task_FB-NonResp", -1, -1, crdm_domain, crdm_img.split(".")[0], crdm_lott_top, crdm_lott_bot, crdm_trials.thisTrialN+1)

            #Ss chose sure $5
        elif sure_key:
            crdm_msg = "You chose: CERTAIN $" + str(crdm_sure_amt)
            log_out(subid, utc_fb, 1, "Task_FB-Sure", -1, -1, crdm_domain, crdm_img.split(".")[0], crdm_lott_top, crdm_lott_bot, crdm_trials.thisTrialN+1)

            #Ss chose lottery
        else:
            crdm_msg = "You chose: LOTTERY"
            log_out(subid, utc_fb, 1, "Task_FB-Lott", -1, -1, crdm_domain, crdm_img.split(".")[0], crdm_lott_top, crdm_lott_bot, crdm_trials.thisTrialN+1)
    TextComponent crdm_feedback_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $crdm_msg
      wrapWidth = 1.5
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  Routine crdm_conf
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    CodeComponent crdm_conf_py
      Code Type = Py
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      Begin Routine:
        utc_conf = int((datetime.utcnow() - epoch).total_seconds()*1000)
        conf_key = []

        if len(key) == 0: #Ss did not respond
            continueRoutine = False
            log_out(subid, utc_conf, 1, "Conf-NoStim", -1, -1, crdm_domain, crdm_img.split(".")[0], crdm_lott_top, crdm_lott_bot, crdm_trials.thisTrialN+1)
        else:
            log_out(subid, utc_conf, 1, "Conf_Stim", -1, -1, crdm_domain, crdm_img.split(".")[0], crdm_lott_top, crdm_lott_bot, crdm_trials.thisTrialN+1)

        #set default gray for all four response boxes
        conf1_color = [0, 0, 0]
        conf2_color = [0, 0, 0]
        conf3_color = [0, 0, 0]
        conf4_color = [0, 0, 0]
      Each Frame:
        conf_key = crdm_conf_resp.keys
        if len(conf_key) == 1: #Ss responded
            conf_key = confkey_map[conf_key[-1]]
            utc_confresp = int((datetime.utcnow() - epoch).total_seconds()*1000)
            if conf_key == "1": #not at all confident
                #change box color to indicate selection
                conf1_color = "darkgray"
                conf2_color = [0,0,0]
                conf3_color = [0,0,0]
                conf4_color = [0,0,0]
            elif conf_key == "2": #less confident
                conf1_color = [0,0,0]
                conf2_color = "darkgray"
                conf3_color = [0,0,0]
                conf4_color = [0,0,0]
            elif conf_key == "3": #somewhat confident
                conf1_color = [0,0,0]
                conf2_color = [0,0,0]
                conf3_color = "darkgray"
                conf4_color = [0,0,0]
            elif conf_key == "4": #very confident
                conf1_color = [0,0,0]
                conf2_color = [0,0,0]
                conf3_color = [0,0,0]
                conf4_color = "darkgray"
      End Routine:
        if len(conf_key) == 1:
            if type(conf_key) == list:
                if conf_key[-1] in ["1", "2", "3", "4"]:
                    log_out(subid, utc_confresp, 1, "Conf_Resp", -1, "{}".format(conf_key), crdm_domain, crdm_img.split(".")[0], crdm_lott_top, crdm_lott_bot, crdm_trials.thisTrialN+1)
                    conf_resps.append(conf_key)
            else:
                if conf_key in ["1", "2", "3", "4"]:
                    log_out(subid, utc_confresp, 1, "Conf_Resp", -1, "{}".format(conf_key), crdm_domain, crdm_img.split(".")[0], crdm_lott_top, crdm_lott_bot, crdm_trials.thisTrialN+1)
                    conf_resps.append(conf_key)
        elif crdm_trial_resp.keys:
            utc_confresp = int((datetime.utcnow() - epoch).total_seconds()*1000)
            log_out(subid, utc_confresp, 1, "Conf_NonResp", -1, 0, crdm_domain, crdm_img.split(".")[0], crdm_lott_top, crdm_lott_bot, crdm_trials.thisTrialN+1)
    TextComponent crdm_conf_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = How confident are you in your choice?
      wrapWidth = 1.5
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    PolygonComponent crdm_conf1
      fillColor [set every frame] = $conf1_color
      lineWidth = 10
      pos = (-0.6, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent crdm_conf1_txt
      letterHeight = 0.04
      pos = (-0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text:
        Not at all
        confident

        1
    PolygonComponent crdm_conf2
      fillColor [set every frame] = $conf2_color
      lineWidth = 10
      pos = (-0.2, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent crdm_conf2_txt
      letterHeight = 0.04
      pos = (-0.2, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text:
        Less
        confident

        2
    PolygonComponent crdm_conf3
      fillColor [set every frame] = $conf3_color
      lineWidth = 10
      pos = (0.2, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent crdm_conf3_txt
      letterHeight = 0.04
      pos = (0.2, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text:
        Somewhat
        confident

        3
    PolygonComponent crdm_conf4
      fillColor [set every frame] = $conf4_color
      lineWidth = 10
      pos = (0.6, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent crdm_conf4_txt
      letterHeight = 0.04
      pos = (0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text:
        Very
        confident

        4
    KeyboardComponent crdm_conf_resp
      allowedKeys = '2', '3', 'j', 'k'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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  Routine crdm_pract_iti
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    CodeComponent crdm_pract_iti1_py
      Code Type = Py
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      Begin Routine:
        #3 CRDM practice trials
        if crdm_pract_trials.thisTrialN == 5:
            continueRoutine = False
    PolygonComponent crdm_pract_iti1_poly
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine crdm_trial_instr
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    CodeComponent crdm_trial_instr_py
      Code Type = Py
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      Begin Routine:
        task_resps = []
        conf_resps = []

        iti_list = [random.random() for i in range(100)] # create list of random floats (0-1) which is length of trial schedule
        s = sum(iti_list) #sum list of rnadom floats
        iti_list = [i*100/s for i in iti_list] #for each item in iti_list: multiple by list length, then divide by list sum
    TextComponent crdm_trial_instr_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Risk & Ambiguity Task *
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    TextComponent crdm_trial_instr_txt
      letterHeight = 0.04
      pos = (0, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        In the second part of the task, you will also be asked to make your choice between the certain monetary outcome and lottery. However, for these trials, you will be asked to rate your choice confidence.

        You will have 4 seconds to view and consider the certain and lottery options, and 3 seconds to choose once the green circle appears. You will then have 4 seconds to rate your confidence.
    TextComponent crdm_trial_instr_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to begin.
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    KeyboardComponent crdm_trial_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_trial
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    CodeComponent crdm_trial_py
      Code Type = Py
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      Begin Experiment:
        delta_time = 0 #used in variable ITI
        sure_pos = [] #position of certain amount option
        sure_resp = []
        crdm_msg = "" #feedback message string

        #stimuli positions and respective responses
        pos = [[-0.5, 0], [0.5, 0]] #left/right screen locations
        resp = ["4", "5"] #4 = left, 5 = right
      Begin Routine:
        utc_trial = int((datetime.utcnow() - epoch).total_seconds()*1000) #output log variable for Ss trial onset
        log_out(subid, utc_trial, 1, "Task_Stim", -1, -1, crdm_domain, crdm_img.split(".")[0], crdm_lott_top, crdm_lott_bot, crdm_trials.thisTrialN+1)
        log_out(subid, utc_trial+4000, 1, "Task_Cue", -1, -1, crdm_domain, crdm_img.split(".")[0], crdm_lott_top, crdm_lott_bot, crdm_trials.thisTrialN+1)

        my_loop = eval(loop_name) #variable for saving data
        stop_timer = None
        stopped_time = 0
        lott_outcome = 0

        #random index for certain outcome position and response
        idx = random.randint(0,1)
        sure_pos = pos[idx]
        sure_resp = resp[idx]
      Each Frame:
        if len(crdm_trial_resp.keys) == 1: #Ss responded
            if stop_timer == None:
                stop_timer = core.Clock()
            else:
                if stop_timer.getTime() >= 0.5:
                    continueRoutine = False
      End Routine:
        utc_resp = int((datetime.utcnow() - epoch).total_seconds()*1000) #output log variable for Ss response time

        key = crdm_trial_resp.keys #variable for feedback routine
        sure_key = crdm_trial_resp.corr #1 if certain $ selected
        my_loop.addData("crdm_trial_type", "task")


        #delta time is remaining time excluding rt
        if type(crdm_trial_resp.rt) is list or crdm_trial_resp.rt >= 2 - 0.5:
            delta_time = 0
        else:
            delta_time = max(0, 2 - (crdm_trial_resp.rt + stopped_time))

        if len(key) == 1: #response received from Ss
            if sure_key == 1: #certain option
                #-1 is placeholder for lott_outcome
                log_out(subid, utc_resp, 1, "Task_Resp-Sure", 1, -1, crdm_domain, crdm_img.split(".")[0], crdm_lott_top, crdm_lott_bot, crdm_trials.thisTrialN+1)
                earnings.append(("sure", crdm_sure_amt, crdm_img, crdm_lott_top, crdm_lott_bot, -1, crdm_win_side, crdm_domain))
                my_loop.addData("crdm_choice", 0)
                my_loop.addData("crdm_choice2", "sure")
                my_loop.addData("crdm_lott", "")
                my_loop.addData("crdm_lott2", "")
            else: #lottery option
                log_out(subid, utc_resp, 1, "Task_Resp-Lott", 2, -1, crdm_domain, crdm_img.split(".")[0], crdm_lott_top, crdm_lott_bot, crdm_trials.thisTrialN+1)
                #probability from bag parameters
                lott_outcome = random.choices([0,1], weights=[100-int(crdm_lott_p), int(crdm_lott_p)])[0]
                #record Ss choice
                my_loop.addData("crdm_choice", 1)
                my_loop.addData("crdm_choice2", "lott")

                if lott_outcome == 1: #winning lottery
                    my_loop.addData("crdm_lott", 1)
                    my_loop.addData("crdm_lott2", "win")
                    if crdm_domain == "gain": #gain domain trial
                        if int(crdm_lott_top) != 0: #top side is winner (non-0 means some money was gained)
                            earnings.append(("lott", crdm_lott_top, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_win_side, crdm_domain))
                        else: #bottom side is winner
                            earnings.append(("lott", crdm_lott_bot, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_win_side, crdm_domain))
                    else: #loss domain trial
                        if int(crdm_lott_top) == 0: #top side is winner (0 means no money is lost)
                            earnings.append(("lott", crdm_lott_top, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_win_side, crdm_domain))
                        else: #bottom side is winner
                            earnings.append(("lott", crdm_lott_bot, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_win_side, crdm_domain))
                else: #losing lottery
                    my_loop.addData("crdm_lott", 0)
                    my_loop.addData("crdm_lott2", "lose")
                    earnings.append(("lott", 0, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_win_side, crdm_domain))
        else: #no response received from Ss
            log_out(subid, utc_resp, 1, "Task_NonResp", 0, -1, crdm_domain, crdm_img.split(".")[0], crdm_lott_top, crdm_lott_bot, crdm_trials.thisTrialN+1)
    ImageComponent crdm_trial_img
      image [set every repeat] = $"images/" + crdm_img
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent crdm_trial_lott_top
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $str("$"+str(crdm_lott_top))
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    TextComponent crdm_trial_lott_bot
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $str("$"+str(crdm_lott_bot))
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    TextComponent crdm_trial_sure_amt
      letterHeight = 0.06
      pos [set every repeat] = sure_pos
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $str("$"+str(crdm_sure_amt))
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    PolygonComponent GRFX_fix
      fillColor = [0,0,0]
      lineColor = [0,0,0]
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 3
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    PolygonComponent crdm_trial_cue
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, 1.0000, -1.0000
      saveStartStop = False
      shape = circle
      size = (0.04, 0.04)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 3
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    KeyboardComponent crdm_trial_resp
      allowedKeys = "4", "5"
      correctAns = $sure_resp
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 4
      stopVal [duration (s)] = 3
      store = first key
      storeCorrect = True
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  Routine crdm_trials_iti
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    CodeComponent crdm_trials_iti1_py
      Code Type = Py
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      Begin Routine:
        utc_iti = int((datetime.utcnow() - epoch).total_seconds()*1000) #output log variable for ITI

        iti_time = iti_list[my_loop.thisIndex] + delta_time #variable ITI for non-practice trials

        if crdm_trials.thisTrialN == 99: #final trial (number of trials - 1)
            continueRoutine = False #don't present ITI fixation
        else: #not final trial
            log_out(subid, utc_iti, 1, "Rand_ITIFix", -1, -1, "xxxx", "xxxxxxxxx", -1, -1, crdm_trials.thisTrialN+2)
      End Routine:
        my_loop.addData("crdm_delta_time", delta_time) #record delta time
        my_loop.addData("crdm_iti_time", iti_time) #record iti time
    PolygonComponent crdm_trials_iti1_poly
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_time
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  Routine crdm_end
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    CodeComponent crdm_end_py
      Code Type = Py
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      Begin Experiment:
        task_end_text = ""
        space_text = ""
      Begin Routine:
        unique_resps = []
        unique_count = 0
        for i in task_resps:
            if i not in unique_resps:
                unique_count += 1
                unique_resps.append(i)

        task_end_text = ""
        space_text = ""
        #filter for nonresponses
        if len(task_resps) < 76 or len(conf_resps) < 76: #95% of 80 CRDM trials
            if len(task_resps) < 76:
                task_end_text = "You failed to respond to " + str(80-len(task_resps)) + " task trials and did not meet the 95% response rate requirement. \n \n The Risk & Ambiguity Task will now close."
            if len(conf_resps) < 76:
                task_end_text = "You failed to respond to both parts of " + str(80-len(conf_resps)) + " trials and did not meet the 95% response rate requirement. \n \n The Risk & Ambiguity Task will now close."
            space_text = "Press SPACE to end."
            exp_proceed = False
            my_loop.addData("crdm_subReject1", "< 95% resp rate")
            my_loop.addData("crdm_subReject1_nonresps-task", 80-len(task_resps))
            my_loop.addData("crdm_subReject1_nonresps-conf", 80-len(conf_resps))
        #filter for single-button responses
        elif unique_count < 2: #same for each exp
            task_end_text = "You provided the same response to all " + str(len(task_resps)) + " trials. \n \n You did not follow task instructions. \n \n The Risk & Ambiguity Task will now close."
            space_text = "Press SPACE to end."
            exp_proceed = False
            my_loop.addData("crdm_subReject2", "1key response")
            my_loop.addData("crdm_subReject2_key", task_resps[0])
        #filter for poor performance on CRDM catch trials (10/20 catch trials -- 0.097% of random success on 10 trials)
        elif sum(catch_trials) < 10:
            task_end_text = "Your performance on the previous trial block demonstrates you did not follow task instructions. \n \n The Risk & Ambiguity Task will now close."
            space_text = "Press SPACE to end."
            exp_proceed = False
            my_loop.addData("crdm_subReject3", "catch fail")
            my_loop.addData("crdm_subReject3_fails", 20-sum(catch_trials))
        #all CRDM task trial criterion are met
        else:
            task_end_text = "You have completed the Risk & Ambiguity Task!"
            space_text = "Press SPACE to continue."
    TextComponent crdm_end_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Risk & Ambiguity Task *
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    TextComponent crdm_end_txt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $task_end_text
      wrapWidth = 1.35
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    TextComponent crdm_end_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $space_text
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    KeyboardComponent crdm_end_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_term_check
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    CodeComponent crdm_term_check_py
      Code Type = Py
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      Begin Routine:
        if exp_proceed == False:
            core.quit()
  Routine crdm_bonus
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    CodeComponent crdm_bonus_py
      Code Type = Py
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      Begin Routine:
        #indexing examples
        #certain chosen - ("sure", 5, crdm_img, crdm_lott_top, crdm_lott_bot, -1, crdm_win_side, crdm_domain)
        #lotto chosen, win top - ("lott", crdm_lott_top, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_win_side, crdm_domain))
        #lotto chosen, win bottom - ("lott", crdm_lott_bot, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_win_side, crdm_domain)
        #lotto chosen, lose - ("lott", 0, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_win_side, crdm_domain)

        earnings_text = ""
        idx = int(random.random() * len(earnings)) #random selection of bonus trial
        choice, money, trial_img, top, bottom, outcome, winning_side, domain = earnings[idx]
        my_loop.addData("bonus_choice", choice) #record bonus trial choice

        red_win = False
        if "red" in trial_img: #red wins in non-ambiguous trial
            red_win = True
        else: #blue wins or ambiguous red trial
            if "ambig" in trial_img: #ambiguous trial
                if winning_side == "top": #red wins
                    red_win = True

        #text for bonus payment screen
        if choice == "cert": ##Ss chose certain $5
            earnings_text = "In the randomly selected trial, you chose: \n \n A CERTAIN $" + str(money)
        else: ##Ss chose lottery
            earnings_text = "In the randomly selected trial, you chose: \n \n PLAY THE LOTTERY! \n \n You will now draw a chip from the lottery bag with these possible values. \n \n Good luck!"
    ImageComponent crdm_bonus_img
      image [set every repeat] = $"images/" + trial_img
      pos = (0.6, -0.1)
      saveStartStop = False
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent crdm_bonus_thanks_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Thank you for participating in the Risk & Ambiguity Task!
      wrapWidth = 1.5
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    TextComponent crdm_bonus_box
      letterHeight = 0.04
      pos = (-0.20, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $earnings_text
      wrapWidth = 1
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    TextComponent crdm_bonus_lott_top
      letterHeight = 0.04
      pos = (0.6, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $str("$"+str(crdm_lott_top))
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    TextComponent crdm_bonus_lott_bot
      letterHeight = 0.04
      pos = (0.6, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $str("$"+str(crdm_lott_bot))
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    TextComponent crdm_bonus_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to end
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    KeyboardComponent crdm_bonus_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_instr8
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    TextComponent crdm_instr8_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Risk & Ambiguity Task *
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    TextComponent crdm_instr8_warn_txt
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        You must answer both the initial question and confidence prompts to complete each trial. The experiment will end if you (1) miss more than 4 trials, or (2) provide responses which indicate you did not understand, or are not following, task instructions. If this happens, you will not be eligible to receive a *bonus earnings*.

        Please remain engaged throughout the experiment and provide earnest, sincere responses for each trial. Remember, your choices could help you walk away with an additional bonus ranging from \$2 to \$65, depending on the seleced *bonus earnings* trial!

        Thank you for your participation!
    TextComponent crdm_instr8_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr8_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_pract_feedback
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    CodeComponent crdm_pract_feedback_py
      Code Type = Py
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      Begin Routine:
        if len(pract_key) == 0: #Ss did not respond
            crdm_msg = "NO RESPONSE"
        elif pract_sure_key: #Ss chose sure amt
            crdm_msg = "CERTAIN $" + str(crdm_sure_amt)
        else: #Ss chose lottery
            crdm_msg = "LOTTERY"
    ImageComponent crdm_pract_FB_img
      disabled = True
      image [set every repeat] = $feedback_img
      saveStartStop = False
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent crdm_pract_feedback_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $crdm_msg
      wrapWidth = 1.5
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  Routine crdm_pract_conf
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    CodeComponent crdm_pract_conf_py
      Code Type = Py
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      Begin Routine:
        #Ss did not respond
        if len(pract_key) == 0:
            continueRoutine = False

        #set default gray for all four response boxes
        conf1_color = [0, 0, 0]
        conf2_color = [0, 0, 0]
        conf3_color = [0, 0, 0]
        conf4_color = [0, 0, 0]
      Each Frame:
        #resp is received
        pract_conf_key = crdm_pract_conf_resp.keys
        if len(pract_conf_key) == 1:
            pract_conf_key = confkey_map[pract_conf_key[-1]]
            #not at all confident
            if pract_conf_key == "1":
                #change box color to indicate selection
                conf1_color = "darkgray"
                conf2_color = [0,0,0]
                conf3_color = [0,0,0]
                conf4_color = [0,0,0]
            #less confident
            elif pract_conf_key == "2":
                conf1_color = [0,0,0]
                conf2_color = "darkgray"
                conf3_color = [0,0,0]
                conf4_color = [0,0,0]
            #somewhat confident
            elif pract_conf_key == "3":
                conf1_color = [0,0,0]
                conf2_color = [0,0,0]
                conf3_color = "darkgray"
                conf4_color = [0,0,0]
            #very confident
            elif pract_conf_key == "4":
                conf1_color = [0,0,0]
                conf2_color = [0,0,0]
                conf3_color = [0,0,0]
                conf4_color = "darkgray"
    TextComponent crdm_pract_conf_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = How confident are you in your choice?
      wrapWidth = 1.5
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    PolygonComponent crdm_pract_conf1
      fillColor [set every frame] = $conf1_color
      lineWidth = 10
      pos = (-0.6, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent crdm_pract_conf1_txt
      letterHeight = 0.04
      pos = (-0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text:
        Not at all
        confident

        1
    PolygonComponent crdm_pract_conf2
      fillColor [set every frame] = $conf2_color
      lineWidth = 10
      pos = (-0.2, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent crdm_pract_conf2_txt
      letterHeight = 0.04
      pos = (-0.2, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text:
        Less
        confident

        2
    PolygonComponent crdm_pract_conf3
      fillColor [set every frame] = $conf3_color
      lineWidth = 10
      pos = (0.2, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent crdm_pract_conf3_txt
      letterHeight = 0.04
      pos = (0.2, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text:
        Somewhat
        confident

        3
    PolygonComponent crdm_pract_conf4
      fillColor [set every frame] = $conf4_color
      lineWidth = 10
      pos = (0.6, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent crdm_pract_conf4_txt
      letterHeight = 0.04
      pos = (0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text:
        Very
        confident

        4
    KeyboardComponent crdm_pract_conf_resp
      allowedKeys = '2', '3', 'j', 'k'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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  Routine crdm_pract_init_fix
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    PolygonComponent crdm_init_fix_poly_2
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine crdm_questplus
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    CodeComponent crdm_questplus_py
      Code Type = Py
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      Begin Experiment:
        #position of certain amount option
        sure_pos = []
        sure_resp = []
        crdm_msg = ""

        #stimuli positions and respective responses
        pos = [[-0.5, 0], [0.5, 0]] #left/right screen locations
        resp = ["4", "5"] #4 = left, 5 = right
      Begin Routine:
        my_loop = eval("questplus_trials")

        #random index for certain outcome position and response
        idx = random.randint(0,1)
        sure_pos = pos[idx]
        sure_resp = resp[idx]
        ado_lott_top = ""
        ado_lott_bot = ""
        ado_img = ""

        if trial_type == "gain":
            log_lik, ent, log_post, sets = g_log_lik, g_ent, g_log_post, g_sets
            mutual_info = rg.get_MI(log_lik,ent,log_post)
        else: #losses
            log_lik, ent, log_post, sets = l_log_lik, l_ent, l_log_post, l_sets
            mutual_info = rl.get_MI(log_lik,ent,log_post)


        # GET_DESIGN based on maximum Mutual information
        idx_design = np.argmax(mutual_info)
        cur_design = sets.choice.iloc[idx_design].to_dict()

        if nonzero_side == "top": #red side of lotto
            ado_lott_top = cur_design["value_reward"] #nonzero value on top (red)
            ado_lott_bot = 0
            if cur_design["amb_level"] == 0: #risk trial
                ado_img = "risk_red_{0}.bmp".format(int(cur_design["p_reward"]*100))
            else: #ambiguity trial
                ado_img = "ambig_{0}.bmp".format(int(cur_design["amb_level"]*100))
        else: #blue side of lotto
            ado_lott_top = 0
            ado_lott_bot = cur_design["value_reward"] #nonzero value on bottom (blue)
            if cur_design["amb_level"] == 0: #risk trial
                ado_img = "risk_blue_{0}.bmp".format(int(cur_design["p_reward"]*100))
            else: #ambiguity trial
                ado_img = "ambig_{0}.bmp".format(int(cur_design["amb_level"]*100))
        ado_sure_amt = cur_design["value_null"]
      End Routine:
        qp_key = crdm_questplus_trial_resp.keys
        qp_sure_key = crdm_questplus_trial_resp.corr
        my_loop.addData("crdm_trial_type", "questplus")

        cur_response = not qp_sure_key #flips .corr convention
        if trial_type == "gain":
            mutual_info, log_post = rg.update_MI(sets.choice, sets.response, cur_design, cur_response, log_lik, ent, log_post)
            post_mean = rg.get_post_mean(np.exp(log_post), sets.param)
            post_sd = rg.get_post_sd(np.exp(log_post), sets.param)
            g_log_lik, g_ent, g_log_post, g_sets = log_lik, ent, log_post, sets
        else: #losses
            mutual_info, log_post = rl.update_MI(sets.choice, sets.response, cur_design, cur_response, log_lik, ent, log_post)
            post_mean = rl.get_post_mean(np.exp(log_post), sets.param)
            post_sd = rl.get_post_sd(np.exp(log_post), sets.param)
            l_log_lik, l_ent, l_log_post, l_sets = log_lik, ent, log_post, sets

        my_loop.addData("response", cur_response)
        my_loop.addData('mean_alpha', post_mean[0])
        my_loop.addData('mean_beta', post_mean[1])
        my_loop.addData('mean_gamma', post_mean[2])
        my_loop.addData('sd_alpha', post_sd[0])
        my_loop.addData('sd_beta', post_sd[1])
        my_loop.addData('sd_gamma', post_sd[2])
        my_loop.addData("lott_reward", cur_design["value_reward"])
        my_loop.addData("lott_prob", int(cur_design["p_reward"]*100))
        my_loop.addData("ambig_level", int(cur_design["amb_level"]*100))
    ImageComponent crdm_questplus_img
      image [set every repeat] = $"images/" + ado_img
      saveStartStop = False
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent crdm_questplus_trial_lott_top_txt
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $str("$"+str(ado_lott_top))
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    TextComponent crdm_questplus_trial_lott_bot_txt
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $str("$"+str(ado_lott_bot))
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    TextComponent crdm_questplus_trial_sure_amt_txt
      letterHeight = 0.06
      pos [set every repeat] = sure_pos
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text [set every repeat]:
        $str("$"+str(ado_sure_amt))
    PolygonComponent GRFX_fix3
      fillColor = [0,0,0]
      lineColor = [0,0,0]
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 3
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    PolygonComponent crdm_questplus_trial_cue
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, 1.0000, -1.0000
      saveStartStop = False
      shape = circle
      size = (0.04, 0.04)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 3
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    KeyboardComponent crdm_questplus_trial_resp
      allowedKeys = "4", "5"
      correctAns = $sure_resp
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      store = first key
      storeCorrect = True
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  Routine crdm_generatecsv
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    CodeComponent crdm_generatecsv_py
      Code Type = Py
      Begin Experiment:
        #Import the relevant libraries
        import pandas as pd
        import os
        import matplotlib.pyplot as plt
        import math
        import numpy as np

        #First, let's read the ADO output for gains and losses and make it DataFrames
        patient_code = expInfo['participant'] #This is to keep the CSV in the same directories as the patient's data
        post_mean_gain = rg.get_post_mean(np.exp(g_log_post), g_sets.param)
        post_mean_loss = rl.get_post_mean(np.exp(l_log_post), l_sets.param)

        #Parameters for the gains
        alpha_pos, beta_pos = post_mean_gain[0], post_mean_gain[1]
        #Parameters for the losses
        alpha_neg, beta_neg = post_mean_loss[0], post_mean_loss[1]

        #Declare the variables
        p_options = [0.75, 0.5, 0.38, 0.25, 0.13]
        amb_options = [0.24, 0.5, 0.74]
        A_null = 0.0 # no ambiguity
        Vmax = 50.0 #The maximum amount we can pay to participants
        Vmin = -50.0 #The minimum amount we can take from participants
        Vsafe_pos = 5.0 # The old safe option in positive trials
        Vsafe_neg = -5.0 # The old safe option in negative trials

        empty_df = pd.DataFrame([],columns=['category','p_reward', 'value_reward'])

        def get_extreme(p_options, trials='gains'):
            extr = {} #Create an empty dict
            V = Vmax
            if trials=='losses': #If trials are losses, assign them -50
                V = Vmin
            for p in p_options: #Iterate through the probability levels
                extr[p] = V #Assign them the 50 dollars value
            return extr

        extrpos = get_extreme(p_options)
        extrneg = get_extreme(p_options,trials='losses')

        #From the dictionaries, we create DataFrames to work with
        def get_extr_df(extr_dict,trials='gains'):
            df_app = pd.DataFrame(extr_dict.items(), columns=['p_reward', 'value_reward'])
            Extr_df = pd.concat([empty_df, df_app], ignore_index=True)
            category = 'Extr_pos'
            if trials=='losses':
                category = 'Extr_neg'
            Extr_df['category'] = category
            Extr_df['ambiguity'] = A_null
            return Extr_df

        def add_ambig_extr(df,amb_options,Vmax=50,prob_amb=0.50,trials='gains'):
            amb_dict = {prob_amb:amb_options}
            df_app = pd.DataFrame(amb_dict.items(), columns=['p_reward', 'ambiguity'])
            df_app = df_app.explode('ambiguity')
            df_app['category'] = df['category']
            df_app['value_reward'] = Vmax
            df = pd.concat([df,df_app],ignore_index=True)
            return df


        #We define a function to calculate the SV of the lotteries given ADO's alpha and beta
        def append_SVreward(df,alpha,beta,trials='gains'):
            Amp = 1.0
            if trials == 'losses':
                Amp = -1.0
            df['SV_reward'] = (df['p_reward'] - beta*df['ambiguity']/2)*Amp*(abs(df['value_reward']))**alpha
            return df

        #We define a function to calculate the SV of the safe options of the trials given the
        #participant's alpha and beta
        def append_Vsafe(df,alpha,beta,trials='gains'):
            Amp = 1.0
            if trials == 'losses':
                Amp = -1.0
            df['SV_New_Safe'] = 0.5*df['SV_reward']
            df['value_lott_SE'] = Amp*(abs(df['SV_New_Safe']) / (df['p_reward']-beta*df['ambiguity']/2)) ** (1 / alpha)
            df['value_safe'] = Amp*(abs(df['SV_New_Safe'])) ** (1 / alpha)
            return df
        #Define the data frames
        df_pos = get_extr_df(extrpos)
        df_pos = add_ambig_extr(df_pos,amb_options)

        df_neg = get_extr_df(extrneg,trials='losses')
        df_neg = add_ambig_extr(df_neg,amb_options,Vmax=Vmin,trials='losses')


        #Add the SV of lottery and safe trials
        df_pos = append_SVreward(df_pos,alpha_pos,beta_pos)
        df_pos = append_Vsafe(df_pos,alpha_pos,beta_pos)

        df_neg = append_SVreward(df_neg,alpha_neg,beta_neg,trials='losses')
        df_neg = append_Vsafe(df_neg,alpha_neg,beta_neg,trials='losses')

        # Safe option dataframe to use when merging multiple dataframes
        df_safe_pos = df_pos[['p_reward','ambiguity','SV_New_Safe','value_lott_SE','value_safe']].copy()
        df_safe_neg = df_neg[['p_reward','ambiguity','SV_New_Safe','value_lott_SE','value_safe']].copy()
        ##Define the trials of subjective equality

        #For gains
        df_SE_pos = df_pos[['category','p_reward','ambiguity','value_lott_SE', 'SV_New_Safe']].copy()
        df_SE_pos['category'] = 'SE_pos'
        df_SE_pos = df_SE_pos.rename(columns={'value_lott_SE':'value_reward'})
        df_SE_pos['value_safe'] = df_safe_pos['value_safe']
        df_SE_pos = df_SE_pos.rename(columns={'SV_New_Safe':'SV_reward'})

        #For losses
        df_SE_neg = df_neg[['category','p_reward','ambiguity','value_lott_SE', 'SV_New_Safe']].copy()
        df_SE_neg['category'] = 'SE_neg'
        df_SE_neg = df_SE_neg.rename(columns={'value_lott_SE':'value_reward'})
        df_SE_neg['value_safe'] = df_safe_neg['value_safe']
        df_SE_neg = df_SE_neg.rename(columns={'SV_New_Safe':'SV_reward'})
        ##Centered around SE

        #For gains
        df_cent_pos= df_SE_pos.copy()
        df_cent_pos['category'] = 'Cent_SE_pos'

        #New dfs
        df_adjusted_pos = df_cent_pos.copy()
        df_adjusted_pos['value_reward'] = df_adjusted_pos['value_reward'] +2.0
        df_adjusted_neg = df_cent_pos.copy()
        df_adjusted_neg['value_reward'] = df_adjusted_neg['value_reward'] - 2.0

        df_cent_pos = pd.concat([df_cent_pos, df_adjusted_pos, df_adjusted_neg], ignore_index=True)

        #Centered around SE DF
        df_cent_pos = append_SVreward(df_cent_pos,alpha_pos,beta_pos)

        # Filter out rows with negative SV_reward values to avoid complex numbers in value of lottery
        df_cent_pos = df_cent_pos[df_cent_pos['SV_reward'] >= 0] #This conditional statement may drop trials.
        df_cent_pos = df_cent_pos.round(2)
        #For losses
        df_cent_neg= df_SE_neg.copy()
        df_cent_neg['category'] = 'Cent_SE_neg'

        #New dfs
        df1_adjusted_pos = df_cent_neg.copy()
        df1_adjusted_pos['value_reward'] = df1_adjusted_pos['value_reward'] +2.0
        df1_adjusted_neg = df_cent_neg.copy()
        df1_adjusted_neg['value_reward'] = df1_adjusted_neg['value_reward'] - 2.0

        df_cent_neg = pd.concat([df_cent_neg, df1_adjusted_pos, df1_adjusted_neg], ignore_index=True)

        #Centered around SE DF
        df_cent_neg = append_SVreward(df_cent_neg,alpha_neg,beta_neg,trials='losses')

        #Selecting our SVdiff sampling. We are doing this by ojo of which SVdiff allows more sampling.
        #We need to create a more systematic method.

        #For Gains
        df_pos = df_pos.sort_values('SV_reward', ascending=False).reset_index(drop=True)
        # fourth ranked SV_reward
        index = 3
        # SV_reward
        col = 4
        SV_max_pos = df_pos.iloc[index,col]
        _SV_safe = df_pos.iloc[index,col+1]
        # sampling here
        _delta_SV = SV_max_pos - _SV_safe
        # second sampling
        _delta_SV2 = 0.5 * _delta_SV
        #For Losses

        df_neg = df_neg.sort_values('SV_reward', ascending=True).reset_index(drop=True)
        # fourth ranked SV_reward
        neg_index = 4
        # SV_reward
        neg_col = 4
        SV_min_neg = df_neg.iloc[neg_index,neg_col]
        neg_SV_safe = df_neg.iloc[neg_index,neg_col+1]
        # sampling here
        neg_delta_SV = SV_min_neg - neg_SV_safe
        # second sampling
        neg_delta_SV2 = 0.5 * neg_delta_SV
        #Creating the Neg target SVdeltas and SV_rewards
        neg_df1 = df_neg[['category','p_reward', 'ambiguity', 'value_safe', 'SV_New_Safe']].copy()
        neg_df1['category'] = 'MaxSVdelta_Loss'
        neg_df1['deltaSV'] = neg_delta_SV
        neg_df1['SV_reward'] = neg_df1['deltaSV'] + neg_df1['SV_New_Safe']
        #new_df1
        neg_df2 = df_neg[['category','p_reward', 'ambiguity', 'value_safe', 'SV_New_Safe']].copy()
        neg_df2['category'] = 'Neg_Half_maxSV_delta'
        neg_df2['deltaSV'] = neg_delta_SV2
        neg_df2['SV_reward'] = neg_df2['deltaSV'] + neg_df2['SV_New_Safe']
        neg_df2

        #neg_df3 = pd.concat([neg_df1,neg_df2], ignore_index=True)

        neg_df3 = df_neg[['category','p_reward', 'ambiguity', 'value_safe', 'SV_New_Safe']].copy()
        neg_df3['category'] = 'MinSVdelta'
        neg_df3['deltaSV'] = -1.0*neg_delta_SV
        neg_df3['SV_reward'] = neg_df3['deltaSV'] + neg_df3['SV_New_Safe']


        neg_df4 = df_neg[['category','p_reward', 'ambiguity', 'value_safe', 'SV_New_Safe']].copy()
        neg_df4['category'] = 'Neg_Half_minSV_delta'
        neg_df4['deltaSV'] = -1.0*neg_delta_SV2
        neg_df4['SV_reward'] = neg_df4['deltaSV'] + neg_df4['SV_New_Safe']
        #new_df4 = pd.concat([min_df1,min_df2], ignore_index=True)
        neg_df = pd.concat([neg_df1,neg_df2,neg_df3,neg_df4], ignore_index=True)
        #Creating the Gains target SVdeltas and SV_rewards
        new_df1 = df_pos[['category','p_reward', 'ambiguity', 'value_safe', 'SV_New_Safe']].copy()
        new_df1['category'] = 'MaxSVdelta'
        new_df1['deltaSV'] = _delta_SV
        new_df1['SV_reward'] = new_df1['deltaSV'] + new_df1['SV_New_Safe']
        #new_df1

        new_df2 = df_pos[['category','p_reward', 'ambiguity', 'value_safe', 'SV_New_Safe']].copy()
        new_df2['category'] = 'half_maxSV_delta'
        new_df2['deltaSV'] = _delta_SV2
        new_df2['SV_reward'] = new_df2['deltaSV'] + new_df2['SV_New_Safe']
        new_df3 = pd.concat([new_df1,new_df2], ignore_index=True)

        min_df1 = df_pos[['category','p_reward', 'ambiguity', 'value_safe', 'SV_New_Safe']].copy()
        min_df1['category'] = 'MinSVdelta'
        min_df1['deltaSV'] = -1.0*_delta_SV
        min_df1['SV_reward'] = min_df1['deltaSV'] + min_df1['SV_New_Safe']


        min_df2 = df_pos[['category','p_reward', 'ambiguity', 'value_safe', 'SV_New_Safe']].copy()
        min_df2['category'] = 'Half_minSV_delta'
        min_df2['deltaSV'] = -1.0*_delta_SV2
        min_df2['SV_reward'] = min_df2['deltaSV'] + min_df2['SV_New_Safe']
        new_df4 = pd.concat([min_df1,min_df2], ignore_index=True)
        new_df5 = pd.concat([new_df3, new_df4], ignore_index=True)
        #Calculate the Value of the lotteries for the New SV that give the same SVdelta

        def calculate_value_reward(df, alpha, beta):
            new_rows = []
            for index,row in df.iterrows(): #loop to go through each row in the input DataFrame (df)
                                        # and extract the relevant values to calculate value_reward
                SV = row['SV_reward']  #The SV of the given row
                value_safe = row['value_safe'] #To keep value_safe constant
                p= row['p_reward']
                #value_safe = 5.0
                A = row['ambiguity']
                if A!= 0:
                    p=0.50
                if SV<0.0:
                    continue
                value_reward = (SV/(p-beta*A/2))**(1/alpha) #Having issues with this beta.
                if (value_reward <100) and (value_reward>=0.0):
                    new_rows.append({'category': row['category'], 'SV_reward': SV, 'p_reward': p, 'ambiguity':A, 'value_safe': value_safe, 'value_reward': value_reward})

                    #All the calculated values are used to create a new dictionary for each combination.
                    #The dictionaries are collected in a new rows list.
                    new_df = pd.DataFrame(new_rows,columns=['category','p_reward','ambiguity', 'value_reward', 'SV_reward', 'value_safe']) #A new DF from the list
                    new_df = new_df.round(2)
            return new_df

        df_SVdeltas_gains = calculate_value_reward(new_df5, alpha_pos, beta_pos)
        def calculate_value_reward_losses(df, alpha, beta):
            new_rows = []
            for index,row in df.iterrows(): #loop to go through each row in the input DataFrame (df)
                                        # and extract the relevant values to calculate value_reward
                SV = row['SV_reward']  #The SV of the given row
                value_safe = row['value_safe'] #To keep value_safe constant
                p= row['p_reward']
                #value_safe = 5.0
                A = row['ambiguity']
                if A!= 0:
                    p=0.50
                if SV>0.0:
                    continue
                value_reward = -((abs(SV)/(p-beta*A/2))**(1/alpha))
                if (value_reward >-100) and (value_reward<=0.0):
                    new_rows.append({'category': row['category'], 'SV_reward': SV, 'p_reward': p, 'ambiguity':A, 'value_safe': value_safe, 'value_reward': value_reward})

                    #All the calculated values are used to create a new dictionary for each combination.
                    #The dictionaries are collected in a new rows list.
                    new_df = pd.DataFrame(new_rows,columns=['category','p_reward','ambiguity', 'value_reward', 'SV_reward', 'value_safe']) #A new DF from the list
                    new_df = new_df.round(2)
            return new_df

        df_SVdeltas_losses =  calculate_value_reward_losses(neg_df, alpha_neg, beta_neg)
        df_SVdeltas_losses

        df_Trials_gains = pd.concat([df_SVdeltas_gains, df_cent_pos],ignore_index=True)
        df_Trials_gains['SV_New_Safe'] = df_Trials_gains['value_safe']**alpha_pos
        df_Trials_gains['deltaSV'] = df_Trials_gains['SV_reward'] - df_Trials_gains['SV_New_Safe']
        #df_Trials_gains = df_Trials_gains.drop(columns=['value_lott_SE'])

        #Convert selected columns to numeric values to be able to round
        columns_to_convert = ['value_reward', 'value_safe', 'SV_reward', 'deltaSV']
        df_Trials_gains[columns_to_convert] = df_Trials_gains[columns_to_convert].apply(pd.to_numeric, errors='coerce')
        df_Trials_gains = df_Trials_gains.round(2)



        desired_trials = 50

        # Check if the current number of trials is less than the desired number

        if len(df_Trials_gains) < desired_trials:

            trials_needed = desired_trials - len(df_Trials_gains)

            # Calculate the number of additional trials for each category (gains and losses)
            trials_needed_gains = math.ceil(trials_needed)  # Round up to the nearest integer

            # Add new trials from the extremes reward or loss
            additional_trials_gains = df_pos.sample(n=trials_needed_gains, replace=True)

            # Concatenate the additional trials to your existing DataFrame
            df_Trials_gains = pd.concat([df_Trials_gains, additional_trials_gains], ignore_index=True)
            df_Trials_gains = df_Trials_gains.drop(columns=['value_lott_SE'])

        # Check if the current number of trials is greater than 50
        if len(df_Trials_gains) > desired_trials:
            trials_to_delete = len(df_Trials_gains) - desired_trials

            # Randomly sample rows to delete
            rows_to_delete = df_Trials_gains[df_Trials_gains['category'] == 'Cent_SE_pos'].sample(n=trials_to_delete)

            # Remove the sampled rows from the DataFrame
            df_Trials_gains = df_Trials_gains.drop(rows_to_delete.index)

        #Rounding to the nearest 50 cents
        df_Trials_gains['value_reward'] = df_Trials_gains['value_reward'].apply(lambda x: round(x * 2) / 2)
        df_Trials_gains['value_safe'] = df_Trials_gains['value_safe'].apply(lambda x: round(x * 2) / 2)


        #Update value_safe and value_reward when it's 0. Note that the SV_reward for those trials will stay as previously calculate as 0.0
        df_Trials_gains.loc[df_Trials_gains['value_safe']==0, 'value_safe'] = 0.5
        df_Trials_gains.loc[df_Trials_gains['value_reward']==0, 'value_reward'] = 0.5

        df_Trials_gains

        df_Trials_losses = pd.concat([df_SVdeltas_losses, df_cent_neg],ignore_index=True)
        df_Trials_losses['SV_New_Safe'] = -abs(df_Trials_losses['value_safe'])**alpha_neg
        df_Trials_losses['deltaSV'] = df_Trials_losses['SV_reward'] - df_Trials_losses['SV_New_Safe']
        #df_Trials_gains = df_Trials_gains.drop(columns=['value_lott_SE'])

        #Convert selected columns to numeric values to be able to round
        columns_to_convert = ['value_reward', 'value_safe', 'SV_reward']
        df_Trials_losses[columns_to_convert] = df_Trials_losses[columns_to_convert].apply(pd.to_numeric, errors='coerce')
        df_Trials_losses = df_Trials_losses.round(2)

        desired_trials = 50

        # Check if the current number of trials is less than the desired number

        if len(df_Trials_losses) < desired_trials:
            trials_needed = desired_trials - len(df_Trials_losses)
            # Calculate the number of additional trials for each category (gains and losses)
            trials_needed_losses = math.floor(trials_needed)  # Round down to the nearest integer

            # Add new trials from the extremes reward or loss
            additional_trials_losses = df_neg.sample(n=trials_needed_gains, replace=True)

            # Concatenate the additional trials to your existing DataFrame
            df_Trials_losses = pd.concat([df_Trials_losses, additional_trials_losses], ignore_index=True)
            df_Trials_losses = df_Trials_losses.drop(columns=['value_lott_SE'])

        # Check if the current number of trials is greater than 50
        if len(df_Trials_losses) > desired_trials:
            trials_to_delete = len(df_Trials_losses) - desired_trials

            # Randomly sample rows to delete
            rows_to_delete = df_Trials_losses[df_Trials_losses['category'] == 'Cent_SE_neg'].sample(n=trials_to_delete)

            # Remove the sampled rows from the DataFrame
            df_Trials_losses = df_Trials_losses.drop(rows_to_delete.index)


        #Reset the index
        df_Trials_losses = df_Trials_losses.reset_index(drop=True)

        #Rounding to the nearest 50 cents
        df_Trials_losses['value_reward'] = df_Trials_losses['value_reward'].apply(lambda x: round(x * 2) / 2)
        df_Trials_losses['value_safe'] = df_Trials_losses['value_safe'].apply(lambda x: round(x * 2) / 2)

        #avoiding 0
        df_Trials_losses.loc[df_Trials_losses['value_safe']==0, 'value_safe'] = 0.5
        df_Trials_losses.loc[df_Trials_losses['value_reward']==0, 'value_reward'] = 0.5

        df_Trials_losses

        #We define the list of image filenames.
        #For now, it is hardcoded. I need to work in soft coding it from
        #the participant's output csv 'crdm_img' column.

           #risk images filenames
        rimages = [ 'risk_blue_75.bmp','risk_blue_50.bmp', 'risk_blue_38.bmp','risk_blue_25.bmp', 'risk_blue_13.bmp',
                   'risk_red_75.bmp','risk_red_50.bmp',  'risk_red_38.bmp', 'risk_red_25.bmp', 'risk_red_13.bmp']
            #Ambiguity images filenames
        aimages = ['ambig_24.bmp', 'ambig_50.bmp','ambig_74.bmp']


        p_options_100 = [int(p * 100) for p in p_options] #We define the probabilities as integers. This is to be consistent with the output csv format
        risk_images = {} #Empty dict to store the results.

        for p in p_options_100: #Iterate through each probability
            #For each probability value, we start with an empty list named
            # matching_images to hold the filenames that match the current probability
            matching_images = [img for img in rimages if isinstance(img, str) and f"_{p}" in img]
            #For each image filename, we check if it's a string
            # and if the formatted probability (like "_75") is present in the filename.
            #If both conditions are true, the image filename is added to the list.
            risk_images[p] = matching_images #After iterating through the file names,we assign the list
            #to the risk_images dictionary using p as a key.

        amb_options = [0.24, 0.5, 0.74]
        amb_options_100 = [int(a * 100) for a in amb_options]
        amb_images = {}

        for a in amb_options_100:
            matching_images = [img for img in aimages if isinstance(img, str) and f"ambig_{a}" in img]
            amb_images[a] = matching_images

        #Making it into the raw CSV
        raw_trials = 'csv/{}_raw_trials.csv'.format(patient_code)

        #Let's reformat to match the psychopy CSV input
        crdm_trials_gains = df_Trials_gains.copy()

        crdm_trials_gains['category'] = 'gain'
        crdm_trials_gains = crdm_trials_gains.sort_values('p_reward', ascending=True).reset_index(drop=True)
        crdm_trials_gains = crdm_trials_gains.drop(columns=['SV_reward', 'SV_New_Safe','deltaSV'])
        crdm_trials_gains['ambiguity'] = (crdm_trials_gains['ambiguity']*100).astype(int)
        crdm_trials_gains['p_reward'] = (crdm_trials_gains['p_reward']*100).astype(int)
        crdm_trials_gains = crdm_trials_gains.rename(columns={
            'value_safe':'crdm_sure_amt',
            'value_reward':'crdm_lott',
            'ambiguity': 'crdm_amb_lev',
            'p_reward':'crdm_lott_p',
            'category':'crdm_domain'})
        crdm_trials_gains['crdm_sure_p'] = 100
        # Reordering columns
        column_order = [
            'crdm_sure_amt', 'crdm_sure_p', 'crdm_lott', 'crdm_lott_p', 'crdm_amb_lev', 'crdm_domain'
        ]
        crdm_trials_gains = crdm_trials_gains[column_order]

        # Sort the DataFrame first by 'crdm_lott_p' and then by 'crdm_amb_lev
        crdm_trials_gains = crdm_trials_gains.sort_values(by=['crdm_lott_p', 'crdm_amb_lev'], ascending=[True,True])

        # Separate rows with 'crdm_amb_lev' different from zero to the end
        zero_ambiguity_rows = crdm_trials_gains[crdm_trials_gains['crdm_amb_lev'] == 0]
        non_zero_ambiguity_rows = crdm_trials_gains[crdm_trials_gains['crdm_amb_lev'] != 0]

        # Concatenate the DataFrames to put rows with 'crdm_amb_lev' different from zero at the end
        crdm_trials_gains = pd.concat([zero_ambiguity_rows, non_zero_ambiguity_rows], ignore_index=True)

        # Randomly assign values to crdm_lott_top or crdm_lott_bot
        # randomly select whether each value should go to the crdm_lott_top or crdm_lott_bot column
        random_assignments = np.random.choice(['crdm_lott_top', 'crdm_lott_bot'], size=len(crdm_trials_gains))

        # np.where to conditionally assign values from the crdm_lott column to the appropriate
        # columns based on the random selections
        crdm_trials_gains['crdm_lott_top'] = np.where(random_assignments == 'crdm_lott_top', crdm_trials_gains['crdm_lott'], 0)
        crdm_trials_gains['crdm_lott_bot'] = np.where(random_assignments == 'crdm_lott_bot', crdm_trials_gains['crdm_lott'], 0)
        column_order = ['crdm_sure_amt', 'crdm_sure_p', 'crdm_lott_top', 'crdm_lott_bot', 'crdm_lott_p', 'crdm_amb_lev', 'crdm_domain']
        crdm_trials_gain = crdm_trials_gains[column_order]

        #Let's reformat to match the psychopy CSV input
        crdm_trials_losses = df_Trials_losses.copy()
        crdm_trials_losses = crdm_trials_losses.sort_values('p_reward', ascending=True).reset_index(drop=True)
        crdm_trials_losses['category'] = 'loss'
        crdm_trials_losses = crdm_trials_losses.drop(columns=['SV_reward', 'SV_New_Safe','deltaSV'])
        crdm_trials_losses['ambiguity'] = (crdm_trials_losses['ambiguity']*100).astype(int)
        crdm_trials_losses['p_reward'] = (crdm_trials_losses['p_reward']*100).astype(int)
        crdm_trials_losses = crdm_trials_losses.rename(columns={
            'value_safe':'crdm_sure_amt',
            'value_reward':'crdm_lott',
            'ambiguity': 'crdm_amb_lev',
            'p_reward':'crdm_lott_p',
            'category':'crdm_domain'})
        crdm_trials_losses['crdm_sure_p'] = 100
        # Reordering columns
        column_order = ['crdm_sure_amt', 'crdm_sure_p', 'crdm_lott', 'crdm_lott_p', 'crdm_amb_lev', 'crdm_domain'
        ]
        crdm_trials_losses = crdm_trials_losses[column_order]
        #crdm_trials_losses =crdm_trials_losses.sort_values(by=['crdm_lott_p', 'crdm_amb_lev'], ascending=True).reset_index(drop=True)

        # Sort the DataFrame first by 'crdm_lott_p' and then by 'crdm_amb_lev
        crdm_trials_losses = crdm_trials_losses.sort_values(by=['crdm_lott_p', 'crdm_amb_lev'], ascending=[True,True])

        # Separate rows with 'crdm_amb_lev' different from zero to the end
        zero_ambiguity_rows_loss = crdm_trials_losses[crdm_trials_losses['crdm_amb_lev'] == 0]
        non_zero_ambiguity_rows_loss = crdm_trials_losses[crdm_trials_losses['crdm_amb_lev'] != 0]

        # Concatenate the DataFrames to put rows with 'crdm_amb_lev' different from zero at the end
        crdm_trials_losses = pd.concat([zero_ambiguity_rows_loss, non_zero_ambiguity_rows_loss], ignore_index=True)
        # Randomly assign values to crdm_lott_top or crdm_lott_bot
        # randomly select whether each value should go to the crdm_lott_top or crdm_lott_bot column
        random_assignments = np.random.choice(['crdm_lott_top', 'crdm_lott_bot'], size=len(crdm_trials_losses))

        # np.where to conditionally assign values from the crdm_lott column to the appropriate
        # columns based on the random selections
        crdm_trials_losses['crdm_lott_top'] = np.where(random_assignments == 'crdm_lott_top', crdm_trials_losses['crdm_lott'], 0)
        crdm_trials_losses['crdm_lott_bot'] = np.where(random_assignments == 'crdm_lott_bot', crdm_trials_losses['crdm_lott'], 0)
        column_order = [
            'crdm_sure_amt', 'crdm_sure_p', 'crdm_lott_top', 'crdm_lott_bot', 'crdm_lott_p', 'crdm_amb_lev', 'crdm_domain'
        ]
        crdm_trials_loss = crdm_trials_losses[column_order]
        crdm_trials = pd.concat([crdm_trials_gain,crdm_trials_loss],ignore_index=True)
        #crdm_trials['crdm_win_side'] = 'bottom'
        #crdm_trials.loc[crdm_trials['crdm_lott_top'] !=0.00, 'crdm_win_side'] = 'top'
        #Creating the crdm_win_side column

        def determine_win_side(row): #Function the determine the wining side of the lottery.
            if row['crdm_lott_top'] != 0.00:
                return 'top'
            else:
                return 'bottom'

        # Apply the function to create the 'crdm_win_side' column
        crdm_trials['crdm_win_side'] = crdm_trials.apply(determine_win_side, axis=1)
        #crdm_trials

        #Function to created crdm_image
        def determine_risk_image_file(row):
            for p, f in risk_images.items():
                if row['crdm_lott_p'] == p and row['crdm_win_side'] == 'top':
                    return  f[1] #using the 2nd item in the dictionary for red images
                elif row['crdm_lott_p'] == p and row['crdm_win_side'] == 'bottom':
                    return f[0] #Using the first item of the dict as blue
        crdm_trials['crdm_img'] = crdm_trials.apply(determine_risk_image_file,axis =1)

        column_order = ['crdm_sure_amt', 'crdm_sure_p', 'crdm_lott_top', 'crdm_lott_bot', 'crdm_lott_p', 'crdm_amb_lev', 'crdm_domain', 'crdm_img', 'crdm_win_side']
        crdm_trials = crdm_trials[column_order]

        #Rounding to the nearest 50 cents

        crdm_trials_csv = 'adaptive_schedules/{}_trials.csv'.format(patient_code)
        crdm_trials.to_csv(crdm_trials_csv,float_format='%.2f',index=False)
  Routine crdm_qp_feedback
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    CodeComponent crdm_QP_FB_py
      Code Type = Py
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      Begin Routine:
        if len(qp_key) == 0: #Ss did not respond
            crdm_msg = "No Response"
        elif qp_sure_key: #Ss chose sure amt
            crdm_msg = "You chose: CERTAIN $" + str(cur_design["value_null"])
        else: #Ss chose lottery
            crdm_msg = "You chose: LOTTERY"
    TextComponent crdm_QP_FB_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $crdm_msg
      wrapWidth = 1.5
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  Routine crdm_QP_instr
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    TextComponent crdm_QP_instr_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Risk & Ambiguity Task *
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    TextComponent crdm_QP_instr_txt
      letterHeight = 0.04
      pos = (0, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        In the first part of the task, you will be asked to make your choice between a certain monetary outcome and a lottery. For these trials, you will not be asked to rate your choice confidence.

        You will have 4 seconds to consider and 3 seconds to respond. Please make your choice when the green circle appears on the screen.
    TextComponent crdm_QP_instr_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to begin.
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    KeyboardComponent crdm_QP_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_instr6
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    TextComponent crdm_instr6_txt
      letterHeight = 0.04
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        When the green circle appears, use the color buttons on the response pad to indicate your choice:

        Press YELLOW to select the left option
        Press GREEN to select the right option
    ImageComponent crdm_instr6_img
      image = images/response_box1-2.png
      pos = (0, -0.1)
      saveStartStop = False
      size = (0.6, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent crdm_instr6_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr6_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_instr7
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    TextComponent crdm_instr7_txt
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.35
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      text:
        After each choice, you will be asked to rate your choice confidence.
        1 indicates you couldn't decide which option you preferred and chose at random, while 4 indicates total certainty in your choice. Use the number keys on the response pad to indicate your confidence:
    ImageComponent crdm_instr7_img
      image = images/response_box1-2.png
      pos = (0, -0.15)
      saveStartStop = False
      size = (0.6, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent crdm_instr7_left_txt
      letterHeight = 0.035
      pos = (-0.575, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        1 - Not at all confident
         2 - Less confident
    TextComponent crdm_instr7_right_txt
      letterHeight = 0.035
      pos = (0.575, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        3 - Somewhat confident
         4 - Very confident
    TextComponent crdm_instr7_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr7_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine crdm_instr1
  Routine crdm_instr2
  Routine crdm_instr3
  Routine crdm_instr4
  Routine crdm_instr5
  Routine crdm_instr6
  Routine crdm_instr7
  Routine crdm_pract_instr
  Routine crdm_pract_init_fix
  LoopInitiator crdm_pract_trials loopType="TrialHandler"
    conditionsFile = crdm_practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'crdm_sure_amt': 5, 'crdm_sure_p': 100, 'crdm_lott_top': 20, 'crdm_lott_bot': 0, 'crdm_lott_p': 13, 'crdm_amb_lev': 0, 'crdm_domain': 'gain', 'crdm_img': 'risk_red_13.bmp', 'crdm_win_side': 'top'},
      {'crdm_sure_amt': 5, 'crdm_sure_p': 100, 'crdm_lott_top': 0, 'crdm_lott_bot': 50, 'crdm_lott_p': 25, 'crdm_amb_lev': 0, 'crdm_domain': 'gain', 'crdm_img': 'risk_blue_25.bmp', 'crdm_win_side': 'bottom'},
      {'crdm_sure_amt': 5, 'crdm_sure_p': 100, 'crdm_lott_top': 40, 'crdm_lott_bot': 0, 'crdm_lott_p': 50, 'crdm_amb_lev': 74, 'crdm_domain': 'gain', 'crdm_img': 'ambig_74.bmp', 'crdm_win_side': 'top'},
      {'crdm_sure_amt': -5, 'crdm_sure_p': 100, 'crdm_lott_top': 0, 'crdm_lott_bot': -8, 'crdm_lott_p': 75, 'crdm_amb_lev': 0, 'crdm_domain': 'loss', 'crdm_img': 'risk_blue_75.bmp', 'crdm_win_side': 'bottom'},
      {'crdm_sure_amt': -5, 'crdm_sure_p': 100, 'crdm_lott_top': -20, 'crdm_lott_bot': 0, 'crdm_lott_p': 75, 'crdm_amb_lev': 0, 'crdm_domain': 'loss', 'crdm_img': 'risk_red_75.bmp', 'crdm_win_side': 'top'},
      {'crdm_sure_amt': -5, 'crdm_sure_p': 100, 'crdm_lott_top': 0, 'crdm_lott_bot': -40, 'crdm_lott_p': 75, 'crdm_amb_lev': 0, 'crdm_domain': 'loss', 'crdm_img': 'risk_blue_75.bmp', 'crdm_win_side': 'bottom'}]
    Routine crdm_pract_trial
    Routine crdm_pract_feedback
    Routine crdm_pract_conf
    Routine crdm_pract_iti
  LoopTerminator crdm_pract_trials
  Routine crdm_QP_instr
  LoopInitiator questplus_trials loopType="TrialHandler"
    conditionsFile = questplus_trials.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('trial_type', 'gain'), ('nonzero_side', 'top')]),
      OrderedDict([('trial_type', 'gain'), ('nonzero_side', 'bottom')]),
      OrderedDict([('trial_type', 'gain'), ('nonzero_side', 'top')]),
      OrderedDict([('trial_type', 'gain'), ('nonzero_side', 'bottom')]),
      OrderedDict([('trial_type', 'gain'), ('nonzero_side', 'top')]),
      OrderedDict([('trial_type', 'gain'), ('nonzero_side', 'bottom')]),
      OrderedDict([('trial_type', 'gain'), ('nonzero_side', 'top')]),
      OrderedDict([('trial_type', 'gain'), ('nonzero_side', 'bottom')]),
      OrderedDict([('trial_type', 'gain'), ('nonzero_side', 'top')]),
      OrderedDict([('trial_type', 'gain'), ('nonzero_side', 'bottom')]),
      OrderedDict([('trial_type', 'gain'), ('nonzero_side', 'top')]),
      OrderedDict([('trial_type', 'gain'), ('nonzero_side', 'bottom')]),
      OrderedDict([('trial_type', 'gain'), ('nonzero_side', 'top')]),
      OrderedDict([('trial_type', 'gain'), ('nonzero_side', 'bottom')]),
      OrderedDict([('trial_type', 'gain'), ('nonzero_side', 'top')]),
      OrderedDict([('trial_type', 'gain'), ('nonzero_side', 'bottom')]),
      OrderedDict([('trial_type', 'gain'), ('nonzero_side', 'top')]),
      OrderedDict([('trial_type', 'gain'), ('nonzero_side', 'bottom')]),
      OrderedDict([('trial_type', 'gain'), ('nonzero_side', 'top')]),
      OrderedDict([('trial_type', 'gain'), ('nonzero_side', 'bottom')]),
      OrderedDict([('trial_type', 'loss'), ('nonzero_side', 'top')]),
      OrderedDict([('trial_type', 'loss'), ('nonzero_side', 'bottom')]),
      OrderedDict([('trial_type', 'loss'), ('nonzero_side', 'top')])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
    Routine crdm_questplus
    Routine crdm_qp_feedback
  LoopTerminator questplus_trials
  Routine crdm_generatecsv
  Routine crdm_trial_instr
  Routine crdm_init_fix
  LoopInitiator crdm_trials loopType="TrialHandler"
    conditionsFile = $crdm_trials_csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('crdm_sure_amt', 9.0), ('crdm_sure_p', 100), ('crdm_lott_top', 0.0), ('crdm_lott_bot', 53.5), ('crdm_lott_p', 13), ('crdm_amb_lev', 0), ('crdm_domain', 'gain'), ('crdm_img', 'risk_blue_13.bmp'), ('crdm_win_side', 'bottom')]),
      OrderedDict([('crdm_sure_amt', 9.0), ('crdm_sure_p', 100), ('crdm_lott_top', 30.5), ('crdm_lott_bot', 0.0), ('crdm_lott_p', 13), ('crdm_amb_lev', 0), ('crdm_domain', 'gain'), ('crdm_img', 'risk_red_13.bmp'), ('crdm_win_side', 'top')]),
      OrderedDict([('crdm_sure_amt', 9.0), ('crdm_sure_p', 100), ('crdm_lott_top', 70.5), ('crdm_lott_bot', 0.0), ('crdm_lott_p', 13), ('crdm_amb_lev', 0), ('crdm_domain', 'gain'), ('crdm_img', 'risk_red_13.bmp'), ('crdm_win_side', 'top')]),
      OrderedDict([('crdm_sure_amt', 9.0), ('crdm_sure_p', 100), ('crdm_lott_top', 32.5), ('crdm_lott_bot', 0.0), ('crdm_lott_p', 13), ('crdm_amb_lev', 0), ('crdm_domain', 'gain'), ('crdm_img', 'risk_red_13.bmp'), ('crdm_win_side', 'top')]),
      OrderedDict([('crdm_sure_amt', 9.0), ('crdm_sure_p', 100), ('crdm_lott_top', 0.0), ('crdm_lott_bot', 34.5), ('crdm_lott_p', 13), ('crdm_amb_lev', 0), ('crdm_domain', 'gain'), ('crdm_img', 'risk_blue_13.bmp'), ('crdm_win_side', 'bottom')]),
      OrderedDict([('crdm_sure_amt', 13.5), ('crdm_sure_p', 100), ('crdm_lott_top', 17.0), ('crdm_lott_bot', 0.0), ('crdm_lott_p', 25), ('crdm_amb_lev', 0), ('crdm_domain', 'gain'), ('crdm_img', 'risk_red_25.bmp'), ('crdm_win_side', 'top')])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
    Routine crdm_trial
    Routine crdm_feedback
    Routine crdm_conf
    Routine crdm_trials_iti
  LoopTerminator crdm_trials
  Routine crdm_bonus
