PsychoPy2experiment version="2023.2.2"
Settings
  Data filename = u'data/%s_%s' % (expName, data.getDateStr(format="%Y-%m-%d_%Hh.%M.%S.%f"))
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['cpdm/cpdm-1contrast.xlsx', 'cpdm/cpdm-5contrasts.xlsx', 'cpdm/arrow.png', 'idm_protocol.csv', 'cdd/2key.png', 'cdd/4key.png', 'cdd/cdd_practice.xlsx', 'cdd/cdd_trials.xlsx', 'crdm/2key.png', 'crdm/4key.png', 'crdm/ambig_24.bmp', 'crdm/ambig_50.bmp', 'crdm/ambig_74.bmp', 'crdm/circle_green_20.bmp', 'crdm/crdm_practice.xlsx', 'crdm/crdm_trials.xlsx', 'crdm/risk_blue_13.bmp', 'crdm/risk_blue_25.bmp', 'crdm/risk_blue_38.bmp', 'crdm/risk_blue_50.bmp', 'crdm/risk_blue_75.bmp', 'crdm/risk_red_13.bmp', 'crdm/risk_red_25.bmp', 'crdm/risk_red_38.bmp', 'crdm/risk_red_50.bmp', 'crdm/risk_red_75.bmp', 'cpdm/cpdm_keys.png', 'cpdm/cpdm_practice.xlsx', 'cpdm/cpdm_run_type.xlsx']
  Screen = 1
  Units = height
  Window size (pixels) = [1728, 1117]
  expName = idm-v2
  keyboardBackend = Pyglet
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Routines
  Routine cpdm_init_fix
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    PolygonComponent cpdm_init_fix_poly
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine cpdm_pract_trial
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    CodeComponent cpdm_pract_trial_code
      Code Type = Both
      Begin Experiment:
        #set default gray for all four response boxes
        left_high_color = [0,0,0]
        left_low_color = [0,0,0]
        right_high_color = [0,0,0]
        right_low_color = [0,0,0]
      Begin JS Experiment:
        left_high_color = [0, 0, 0];
        left_low_color = [0, 0, 0];
        right_high_color = [0, 0, 0];
        right_low_color = [0, 0, 0];

        rand_num = 0;
      Begin JS Routine:
        my_loop = eval(practice_loop_name);
        trial_acc = 0;
        trial_conf = 0;
        left_high_color = [0, 0, 0];
        left_low_color = [0, 0, 0];
        right_high_color = [0, 0, 0];
        right_low_color = [0, 0, 0];
        is_clockwise = false;
        if ((cpdm_gabor_orient > 0.0)) {
            is_clockwise = true;
        } else {
            if ((cpdm_gabor_orient === 0.0)) {
                rand_num = Math.round(Math.random() + 1) ;
                if ((rand_num === 1)) {
                    is_clockwise = true;
                } else {
                    is_clockwise = false;
                }
            }
        }
      Begin Routine:
        my_loop = eval(practice_loop_name)
        trial_acc = 0
        trial_conf = 0

        #set default gray for all four response boxes
        left_high_color = [0,0,0]
        left_low_color = [0,0,0]
        right_high_color = [0,0,0]
        right_low_color = [0,0,0]

        is_clockwise = False
        if cpdm_gabor_orient > 0.0:
            is_clockwise = True
        elif cpdm_gabor_orient == 0.0:
            rand_num = random.randint(1,2)
            if rand_num == 1:
                is_clockwise = True
            else:
                is_clockwise = False
      Each Frame:
        #each trial and resp
        #checks which key Ss pressed and changed the color of the selected box
        #depending on correctness of selection
        #also changes correct_resp variable which is recorded in End Routine

        #resp is received
        key = cpdm_pract_trial_resp.keys
        if len(key) == 1:
            #Ss selected Left-High
            if key == "q":
                trial_conf = 1
                #and correct resp is Left
                if is_clockwise == False:
                    #change upper-left box to green
                    left_high_color = "green"
                    #set correct resp to 1
                    trial_acc = 1
                #incorrect left resp
                else:
                    left_high_color = "red"
            elif key == "a":
                #correct left resp
                if is_clockwise == False:
                    left_low_color = "green"
                    trial_acc = 1
                else:
                    left_low_color = "red"
            elif key == "p":
                trial_conf = 1
                #correct right resp
                if is_clockwise == True:
                    right_high_color = "green"
                    trial_acc = 1
                    trial_conf = 1
                #incorrect right resp
                else:
                    right_high_color = "red"
            elif key == "l":
                #correct right resp
                if is_clockwise == True:
                    right_low_color = "green"
                    trial_acc = 1
                #incorrect right resp
                else:
                    right_low_color = "red"
      Each JS Frame:
        key = cpdm_pract_trial_resp.keys;
        if (!(key === undefined) && (key.length == 1)) {
            if ((key === "q")) {
                trial_conf = 1;
                if ((is_clockwise === false)) {
                    left_high_color = "green";
                    trial_acc = 1;
                } else {
                    left_high_color = "red";
                }
            } else {
                if ((key === "a")) {
                    if ((is_clockwise === false)) {
                        left_low_color = "green";
                        trial_acc = 1;
                    } else {
                        left_low_color = "red";
                    }
                } else {
                    if ((key === "p")) {
                        trial_conf = 1;
                        if ((is_clockwise === true)) {
                            right_high_color = "green";
                            trial_acc = 1;
                        } else {
                            right_high_color = "red";
                        }
                    } else {
                        if ((key === "l")) {
                            if ((is_clockwise === true)) {
                                right_low_color = "green";
                                trial_acc = 1;
                            } else {
                                right_low_color = "red";
                            }
                        }
                    }
                }
            }
        }
      End JS Routine:
        my_loop.addData("cpdm_pract_acc", trial_acc);
        my_loop.addData("cpdm_pract_conf", trial_conf);
        my_loop.addData("cpdm_trial_type", "practice");

        left_high_color = [0, 0, 0];
        left_low_color = [0, 0, 0];
        right_high_color = [0, 0, 0];
        right_low_color = [0, 0, 0];

        cpdm_pract_trial_left_high_poly.setFillColor(new util.Color(left_high_color), false);
        cpdm_pract_trial_left_low_poly.setFillColor(new util.Color(left_low_color), false);
        cpdm_pract_trial_right_high_poly.setFillColor(new util.Color(right_high_color), false);
        cpdm_pract_trial_right_low_poly.setFillColor(new util.Color(right_low_color), false);
      End Routine:
        my_loop.addData("cpdm_pract_acc", trial_acc)
        my_loop.addData("cpdm_pract_conf", trial_conf)
        my_loop.addData("cpdm_trial_type", "practice")
    GratingComponent cpdm_pract_trial_gabor
      contrast [set every repeat] = cpdm_gabor_contrast
      mask = gauss
      ori [set every repeat] = cpdm_gabor_orient
      saveStartStop = False
      sf = 6
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      tex = sin
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    PolygonComponent cpdm_pract_trial_left_high_poly
      fillColor [set every frame] = $left_high_color
      lineWidth = 15
      pos = (-0.45, 0.25)
      saveStartStop = False
      shape = rectangle
      size = (0.35, 0.35)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2
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    PolygonComponent cpdm_pract_trial_right_high_poly
      fillColor [set every frame] = $right_high_color
      lineWidth = 15
      pos = (0.45, 0.25)
      saveStartStop = False
      shape = rectangle
      size = (0.35, 0.35)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2
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    PolygonComponent cpdm_pract_trial_left_low_poly
      fillColor [set every frame] = $left_low_color
      lineWidth = 15
      pos = (-0.45, -0.25)
      saveStartStop = False
      shape = rectangle
      size = (0.35, 0.35)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2
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    PolygonComponent cpdm_pract_trial_right_low_poly
      fillColor [set every frame] = $right_low_color
      lineWidth = 15
      pos = (0.45, -0.25)
      saveStartStop = False
      shape = rectangle
      size = (0.35, 0.35)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2
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    TextComponent cpdm_pract_trial_left_high_txt
      letterHeight = 0.035
      pos = (-0.45, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2
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      text:
        LEFT

        HIGH Confidence

        \$9 or \$0
    TextComponent cpdm_pract_trial_right_high_txt
      letterHeight = 0.035
      pos = (0.45, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2
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      text:
        RIGHT

        HIGH Confidence

        \$9 or \$0
    TextComponent cpdm_pract_trial_left_low_txt
      letterHeight = 0.035
      pos = (-0.45, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2
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      text:
        LEFT

        LOW Confidence

        \$8 or \$6
    TextComponent cpdm_pract_trial_right_low_txt
      letterHeight = 0.035
      pos = (0.45, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2
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      text:
        RIGHT

        LOW Confidence

        \$8 or \$6
    KeyboardComponent cpdm_pract_trial_resp
      allowedKeys = 'q', 'a', 'p', 'l'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2
      store = first key
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  Routine cpdm_pract_instr
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    TextComponent cpdm_pract_instr_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Visual Decision Making Task *
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    TextComponent cpdm_pract_instr_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        Let's practice!

        In these example trials, the box you select will turn green if you make the correct choice regarding tilt of the pattern. If you are incorrect, the box you select will turn red. Feedback about performance during the practice trials is to help you understand the task, but will not be given during the actual experiment.
    TextComponent cpdm_pract_instr_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to begin.
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    KeyboardComponent cpdm_pract_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cpdm_trial_instr
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    TextComponent cpdm_trial_instr_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Visual Decision Making Task *
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    TextComponent cpdm_trial_instr_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        Now that you have practiced, the actual task will begin.

        In the following four sections, you will be presented with a series of trials similar to those you just practiced. Here, you will not receive feedback about your performance. The option you select will turn light gray to indicate your choice. For each trial, you have 2 seconds to make your decision.

        When a white cross appears, please focus your attention on the center of the screen.
    TextComponent cpdm_trial_instr_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to begin.
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    KeyboardComponent cpdm_trial_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cpdm_run_setter
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    CodeComponent cpdm_run_setter_code
      Code Type = Auto->JS
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      Begin Routine:
        #Block QC check variables
        run_resps = []
        catch_trials = []

        #selects contrast schedule depending on run type
        #low volatility
        if "low_vol" in cpdm_run_dimension:
            #be careful of relative path
            run_schedule = "cpdm/cpdm-1contrast.xlsx"
        #high volatility
        else:
            run_schedule = "cpdm/cpdm-5contrasts.xlsx"

        #flexible response text for high confidence options depending on run type
        if "low_risk" in cpdm_run_dimension:
            left_resp_txt = "LEFT \n \n HIGH Confidence \n \n $9 or $0"
            right_resp_txt = "RIGHT \n \n HIGH Confidence \n \n $9 or $0"
        else:
            left_resp_txt = "LEFT \n \n HIGH Confidence \n \n $13 or $0"
            right_resp_txt = "RIGHT \n \n HIGH Confidence \n \n $13 or $0"

        #create list of 200 random ITIs
        #iterate through list of ITIs, multiple by number of floats, divide by sum of original list
        #creates random list of ITI value for each trial which sum to 200
        iti_list = [random.random() for i in range(200)]
        s = sum(iti_list)
        iti_list = [i*200/s for i in iti_list]
  Routine cpdm_loop_instr
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    CodeComponent cpdm_loop_instr_code
      Code Type = Auto->JS
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      Begin Experiment:
        loop_spec_instr = ""
        run_counter = 1
      Begin Routine:
        if "low_risk" in cpdm_run_dimension:
            corr_high_txt = "Correct \n High Confidence \n $9"
        else:
            corr_high_txt = "Correct \n High Confidence \n $13"
      End Routine:
        run_counter += 1
    TextComponent cpdm_loop_instr_code2
      letterHeight = 0.06
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Block " + str(run_counter)
      wrapWidth = 1.25
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    PolygonComponent cpdm_loop_instr_corr_high_poly
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 15
      pos = (-0.125, 0.125)
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    PolygonComponent cpdm_loop_instr_right_high_poly
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 15
      pos = (0.125, 0.125)
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.25)
      startVal [time (s)] = 0
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    PolygonComponent cpdm_loop_instr_left_low_poly
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 15
      pos = (-0.125, -0.125)
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    PolygonComponent cpdm_loop_instr_right_low_poly
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 15
      pos = (0.125, -0.125)
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent cpdm_loop_instr_corr_high_txt
      color = 0.1216, 0.4745, 0.1216
      letterHeight = 0.03
      pos = (-0.125, 0.125)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $corr_high_txt
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    TextComponent cpdm_loop_instr_incorr_high_txt
      color = salmon
      letterHeight = 0.03
      pos = (0.125, 0.125)
      saveStartStop = False
      startVal [time (s)] = 0
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      text:
        Incorrect
        High Confidence
        \$0
    TextComponent cpdm_loop_instr_corr_low_txt
      color = darkseagreen
      letterHeight = 0.03
      pos = (-0.125, -0.125)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Correct
        Low Confidence
        \$8
    TextComponent cpdm_loop_instr_incorr_low
      color = salmon
      letterHeight = 0.03
      pos = (0.125, -0.125)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Incorrect
        Low Confidence
        \$6
    TextComponent cpdm_loop_instr_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent cpdm_loop_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cpdm_trial
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    CodeComponent cpdm_trial_code
      Code Type = Both
      Before Experiment:
        #used in variable ITI
        delta_time = 0
      Before JS Experiment:
        delta_time = 0;
      Begin Experiment:
        cpdm_trial_counter = 1
      Begin JS Experiment:
        cpdm_trial_counter = 1;
      Begin JS Routine:
        my_loop = eval(loop_name);
        stop_timer = null;
        stopped_time = 0;
        trial_acc = 0;
        trial_conf = 0;
        left_high_color = [0, 0, 0];
        left_low_color = [0, 0, 0];
        right_high_color = [0, 0, 0];
        right_low_color = [0, 0, 0];
        is_clockwise = false;
        if ((cpdm_gabor_orient > 0.0)) {
            is_clockwise = true;
        } else {
            if ((cpdm_gabor_orient === 0.0)) {
                rand_num = random.randint(1, 2);
                if ((rand_num === 1)) {
                    is_clockwise = true;
                } else {
                    is_clockwise = false;
                }
            }
        }
      Begin Routine:
        my_loop = eval(loop_name)
        stop_timer = None
        stopped_time = 0
        trial_acc = 0
        trial_conf = 0

        #set default gray for all four response boxes
        left_high_color = [0,0,0]
        left_low_color = [0,0,0]
        right_high_color = [0,0,0]
        right_low_color = [0,0,0]

        is_clockwise = False
        if cpdm_gabor_orient > 0.0:
            is_clockwise = True
        elif cpdm_gabor_orient == 0.0:
            rand_num = random.randint(1,2)
            if rand_num == 1:
                is_clockwise = True
            else:
                is_clockwise = False
      Each Frame:
        #checks if resp is received for each trial and which key was pressed
        #depending on which key is pressed, respective box color changes and
        #correct_resp variable is updated if correct (preassigned to 0)
        key = cpdm_trial_resp.keys
        if len(key) == 1:
            if stop_timer == None:
                stop_timer = core.Clock()
            else:
                stopped_time = stop_timer.getTime()
                if stopped_time >= 0.5:
                    continueRoutine = False
            #Left - High Confidence
            if key == "q":
                trial_conf = 1
                #correct left resp
                if is_clockwise == False:
                    #indicates selection without performance feedback
                    left_high_color = "darkgray"
                    #indicate correct resp for current trial
                    trial_acc = 1
                #incorrect left resp
                else:
                    left_high_color = "darkgray"
            #Left - Low Confidence
            elif key == "a":
                #correct left resp
                if is_clockwise == False:
                    left_low_color = "darkgray"
                    trial_acc = 1
                else:
                    left_low_color = "darkgray"
            #Right - High Confidence
            elif key == "p":
                trial_conf = 1
                #correct right resp
                if is_clockwise == True:
                    right_high_color = "darkgray"
                    trial_acc = 1
                #incorrect right resp
                else:
                    right_high_color = "darkgray"
            #Right - Low Confidence
            elif key == "l":
                #correct right resp
                if is_clockwise == True:
                    right_low_color = "darkgray"
                    trial_acc = 1
                #incorrect right resp
                else:
                    right_low_color = "darkgray"
      Each JS Frame:
        key = cpdm_trial_resp.keys;
        if (!(key === undefined) && (key.length == 1)) {
            if ((stop_timer === null)) {
                stop_timer = new util.Clock();
            } else {
                stopped_time = stop_timer.getTime();
                if ((stopped_time >= 0.5)) {
                    continueRoutine = false;
                }
            }
            if ((key === "q")) {
                trial_conf = 1;
                if ((is_clockwise === false)) {
                    left_high_color = "darkgray";
                    trial_acc = 1;
                } else {
                    left_high_color = "darkgray";
                }
            } else {
                if ((key === "a")) {
                    if ((is_clockwise === false)) {
                        left_low_color = "darkgray";
                        trial_acc = 1;
                    } else {
                        left_low_color = "darkgray";
                    }
                } else {
                    if ((key === "p")) {
                        trial_conf = 1;
                        if ((is_clockwise === true)) {
                            right_high_color = "darkgray";
                            trial_acc = 1;
                        } else {
                            right_high_color = "darkgray";
                        }
                    } else {
                        if ((key === "l")) {
                            if ((is_clockwise === true)) {
                                right_low_color = "darkgray";
                                trial_acc = 1;
                            } else {
                                right_low_color = "darkgray";
                            }
                        }
                    }
                }
            }
        }
      End JS Routine:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        my_loop.addData("cpdm_run_dimension", cpdm_run_dimension);
        my_loop.addData("cpdm_acc", trial_acc);
        my_loop.addData("cpdm_conf", trial_conf);
        my_loop.addData("cpdm_trial_type", "task");
        key = cpdm_trial_resp.keys;
        if (_pj.in_es6(key, ["q", "a", "p", "l"])) {
            run_resps.push(key);
        }
        if ((((cpdm_trial_resp.rt) === undefined) || (cpdm_trial_resp.rt >= (2 - 0.5)))) {
            delta_time = 0;
        } else {
            delta_time = Math.max(0, (2 - (cpdm_trial_resp.rt + stopped_time)));
        }
        if (_pj.in_es6("low_risk", cpdm_run_dimension)) {
            if ((key === "q")) {
                if ((is_clockwise === false)) {
                    my_loop.addData("cpdm_conf2", "high");
                    my_loop.addData("cpdm_money", 9);
                    if ((cpdm_catch_trial === 1)) {
                        catch_trials.push(1);
                    }
                    if ((cpdm_gabor_orient !== 0.0)) {
                        cpdm_trials.push(["CPDM", 9, "CORRECT", "HIGH"]);
                    }
                } else {
                    my_loop.addData("cpdm_conf2", "high");
                    my_loop.addData("cpdm_money", 0);
                    if ((cpdm_catch_trial === 1)) {
                        catch_trials.push(0);
                    }
                    if ((cpdm_gabor_orient !== 0.0)) {
                        cpdm_trials.push(["CPDM", 0, "INCORRECT", "HIGH"]);
                    }
                }
            } else {
                if ((key === "a")) {
                    if ((is_clockwise === false)) {
                        my_loop.addData("cpdm_conf2", "low");
                        my_loop.addData("cpdm_money", 8);
                        if ((cpdm_catch_trial === 1)) {
                            catch_trials.push(1);
                        }
                        if ((cpdm_gabor_orient !== 0.0)) {
                            cpdm_trials.push(["CPDM", 8, "CORRECT", "LOW"]);
                        }
                    } else {
                        my_loop.addData("cpdm_conf2", "low");
                        my_loop.addData("cpdm_money", 6);
                        if ((cpdm_catch_trial === 1)) {
                            catch_trials.push(0);
                        }
                        if ((cpdm_gabor_orient !== 0.0)) {
                            cpdm_trials.push(["CPDM", 6, "INCORRECT", "LOW"]);
                        }
                    }
                } else {
                    if ((key === "p")) {
                        if ((is_clockwise === true)) {
                            my_loop.addData("cpdm_conf2", "high");
                            my_loop.addData("cpdm_money", 9);
                            if ((cpdm_catch_trial === 1)) {
                                catch_trials.push(1);
                            }
                            if ((cpdm_gabor_orient !== 0.0)) {
                                cpdm_trials.push(["CPDM", 9, "CORRECT", "HIGH"]);
                            }
                        } else {
                            my_loop.addData("cpdm_conf2", "high");
                            my_loop.addData("cpdm_money", 0);
                            if ((cpdm_catch_trial === 1)) {
                                catch_trials.push(0);
                            }
                            if ((cpdm_gabor_orient !== 0.0)) {
                                cpdm_trials.push(["CPDM", 0, "INCORRECT", "HIGH"]);
                            }
                        }
                    } else {
                        if ((key === "l")) {
                            if ((is_clockwise === true)) {
                                my_loop.addData("cpdm_conf2", "low");
                                my_loop.addData("cpdm_money", 8);
                                if ((cpdm_catch_trial === 1)) {
                                    catch_trials.push(1);
                                }
                                if ((cpdm_gabor_orient !== 0.0)) {
                                    cpdm_trials.push(["CPDM", 8, "CORRECT", "LOW"]);
                                }
                            } else {
                                my_loop.addData("cpdm_conf2", "low");
                                my_loop.addData("cpdm_money", 6);
                                if ((cpdm_catch_trial === 1)) {
                                    catch_trials.push(0);
                                }
                                if ((cpdm_gabor_orient !== 0.0)) {
                                    cpdm_trials.push(["CPDM", 6, "INCORRECT", "LOW"]);
                                }
                            }
                        }
                    }
                }
            }
        } else {
            if ((key === "q")) {
                if ((is_clockwise === false)) {
                    my_loop.addData("cpdm_conf2", "high");
                    my_loop.addData("cpdm_money", 13);
                    if ((cpdm_catch_trial === 1)) {
                        catch_trials.push(1);
                    }
                    if ((cpdm_gabor_orient !== 0.0)) {
                        cpdm_trials.push(["CPDM", 13, "CORRECT", "HIGH"]);
                    }
                } else {
                    my_loop.addData("cpdm_conf2", "high");
                    my_loop.addData("cpdm_money", 0);
                    if ((cpdm_catch_trial === 1)) {
                        catch_trials.push(0);
                    }
                    if ((cpdm_gabor_orient !== 0.0)) {
                        cpdm_trials.push(["CPDM", 0, "INCORRECT", "HIGH"]);
                    }
                }
            } else {
                if ((key === "a")) {
                    if ((is_clockwise === false)) {
                        my_loop.addData("cpdm_conf2", "low");
                        my_loop.addData("cpdm_money", 8);
                        if ((cpdm_catch_trial === 1)) {
                            catch_trials.push(1);
                        }
                        if ((cpdm_gabor_orient !== 0.0)) {
                            cpdm_trials.push(["CPDM", 8, "CORRECT", "LOW"]);
                        }
                    } else {
                        my_loop.addData("cpdm_conf2", "low");
                        my_loop.addData("cpdm_money", 6);
                        if ((cpdm_catch_trial === 1)) {
                            catch_trials.push(0);
                        }
                        if ((cpdm_gabor_orient !== 0.0)) {
                            cpdm_trials.push(["CPDM", 6, "INCORRECT", "LOW"]);
                        }
                    }
                } else {
                    if ((key === "p")) {
                        if ((is_clockwise === true)) {
                            my_loop.addData("cpdm_conf2", "high");
                            my_loop.addData("cpdm_money", 13);
                            if ((cpdm_catch_trial === 1)) {
                                catch_trials.push(1);
                            }
                            if ((cpdm_gabor_orient !== 0.0)) {
                                cpdm_trials.push(["CPDM", 13, "CORRECT", "HIGH"]);
                            }
                        } else {
                            my_loop.addData("cpdm_conf2", "high");
                            my_loop.addData("cpdm_money", 0);
                            if ((cpdm_catch_trial === 1)) {
                                catch_trials.push(0);
                            }
                            if ((cpdm_gabor_orient !== 0.0)) {
                                cpdm_trials.push(["CPDM", 0, "INCORRECT", "HIGH"]);
                            }
                        }
                    } else {
                        if ((key === "l")) {
                            if ((is_clockwise === true)) {
                                my_loop.addData("cpdm_conf2", "low");
                                my_loop.addData("cpdm_money", 8);
                                if ((cpdm_catch_trial === 1)) {
                                    catch_trials.push(1);
                                }
                                if ((cpdm_gabor_orient !== 0.0)) {
                                    cpdm_trials.push(["CPDM", 8, "CORRECT", "LOW"]);
                                }
                            } else {
                                my_loop.addData("cpdm_conf2", "low");
                                my_loop.addData("cpdm_money", 6);
                                if ((cpdm_catch_trial === 1)) {
                                    catch_trials.push(0);
                                }
                                if ((cpdm_gabor_orient !== 0.0)) {
                                    cpdm_trials.push(["CPDM", 6, "INCORRECT", "LOW"]);
                                }
                            }
                        }
                    }
                }
            }
        }
      End Routine:
        #binary accuracy & confidence
        my_loop.addData("cpdm_acc", trial_acc)
        my_loop.addData("cpdm_conf", trial_conf)
        my_loop.addData("cpdm_trial_type", "task")
        key = cpdm_trial_resp.keys
        if key in ["q", "a", "p", "l"]:
            run_resps.append(key)

        if type(cpdm_trial_resp.rt) is list or cpdm_trial_resp.rt >= 2 - 0.5:
            delta_time = 0
        else:
            delta_time = max(0, 2 - (cpdm_trial_resp.rt + stopped_time))

        #low risk possible payouts
        if "low_risk" in cpdm_run_dimension:
            if key == "q":
                #LEFT - HIGH correct
                if is_clockwise == False:
                    my_loop.addData("cpdm_conf2", "high")
                    my_loop.addData("cpdm_money", 9)
                    #catch trial performance
                    if cpdm_catch_trial == 1:
                        catch_trials.append(1)
                    #correct response is not random
                    if cpdm_gabor_orient != 0.0:
                        cpdm_trials.append(("CPDM", 9, "CORRECT", "HIGH"))
                #LEFT - HIGH incorrect
                else:
                    my_loop.addData("cpdm_conf2", "high")
                    my_loop.addData("cpdm_money", 0)
                    #catch trial performance
                    if cpdm_catch_trial == 1:
                        catch_trials.append(0)
                    #correct response is not random
                    if cpdm_gabor_orient != 0.0:
                        cpdm_trials.append(("CPDM", 0, "INCORRECT", "HIGH"))
            elif key == "a":
                #LEFT - LOW correct
                if is_clockwise == False:
                    my_loop.addData("cpdm_conf2", "low")
                    my_loop.addData("cpdm_money", 8)
                    #catch trial performance
                    if cpdm_catch_trial == 1:
                        catch_trials.append(1)
                    #correct response is not random
                    if cpdm_gabor_orient != 0.0:
                        cpdm_trials.append(("CPDM", 8, "CORRECT", "LOW"))
                #LEFT - LOW incorrect
                else:
                    my_loop.addData("cpdm_conf2", "low")
                    my_loop.addData("cpdm_money", 6)
                    #catch trial performance
                    if cpdm_catch_trial == 1:
                        catch_trials.append(0)
                    #correct response is not random
                    if cpdm_gabor_orient != 0.0:
                        cpdm_trials.append(("CPDM", 6, "INCORRECT", "LOW"))
            elif key == "p":
                #RIGHT - HIGH correct
                if is_clockwise == True:
                    my_loop.addData("cpdm_conf2", "high")
                    my_loop.addData("cpdm_money", 9)
                    #catch trial performance
                    if cpdm_catch_trial == 1:
                        catch_trials.append(1)
                    #correct response is not random
                    if cpdm_gabor_orient != 0.0:
                        cpdm_trials.append(("CPDM", 9, "CORRECT", "HIGH"))
                #RIGHT - HIGH incorrect
                else:
                    my_loop.addData("cpdm_conf2", "high")
                    my_loop.addData("cpdm_money", 0)
                    #catch trial performance
                    if cpdm_catch_trial == 1:
                        catch_trials.append(0)
                    #correct response is not random
                    if cpdm_gabor_orient != 0.0:
                        cpdm_trials.append(("CPDM", 0, "INCORRECT", "HIGH"))
            elif key == "l":
                #RIGHT - LOW correct
                if is_clockwise == True:
                    my_loop.addData("cpdm_conf2", "low")
                    my_loop.addData("cpdm_money", 8)
                    #catch trial performance
                    if cpdm_catch_trial == 1:
                        catch_trials.append(1)
                    #correct response is not random
                    if cpdm_gabor_orient != 0.0:
                        cpdm_trials.append(("CPDM", 8, "CORRECT", "LOW"))
                #RIGHT - LOW incorrect
                else:
                    my_loop.addData("cpdm_conf2", "low")
                    my_loop.addData("cpdm_money", 6)
                    #catch trial performance
                    if cpdm_catch_trial == 1:
                        catch_trials.append(0)
                    #correct response is not random
                    if cpdm_gabor_orient != 0.0:
                        cpdm_trials.append(("CPDM", 6, "INCORRECT", "LOW"))
        #high risk possible payouts
        else:
            if key == "q":
                #LEFT - HIGH correct
                if is_clockwise == False:
                    my_loop.addData("cpdm_conf2", "high")
                    my_loop.addData("cpdm_money", 13)
                    #catch trial performance
                    if cpdm_catch_trial == 1:
                        catch_trials.append(1)
                    #correct response is not random
                    if cpdm_gabor_orient != 0.0:
                        cpdm_trials.append(("CPDM", 13, "CORRECT", "HIGH"))
                #LEFT - HIGH incorrect
                else:
                    my_loop.addData("cpdm_conf2", "high")
                    my_loop.addData("cpdm_money", 0)
                    #catch trial performance
                    if cpdm_catch_trial == 1:
                        catch_trials.append(0)
                    #correct response is not random
                    if cpdm_gabor_orient != 0.0:
                        cpdm_trials.append(("CPDM", 0, "INCORRECT", "HIGH"))
            elif key == "a":
                #LEFT - LOW correct
                if is_clockwise == False:
                    my_loop.addData("cpdm_conf2", "low")
                    my_loop.addData("cpdm_money", 8)
                    #catch trial performance
                    if cpdm_catch_trial == 1:
                        catch_trials.append(1)
                    #correct response is not random
                    if cpdm_gabor_orient != 0.0:
                        cpdm_trials.append(("CPDM", 8, "CORRECT", "LOW"))
                #Left - LOW incorrect
                else:
                    my_loop.addData("cpdm_conf2", "low")
                    my_loop.addData("cpdm_money", 6)
                    #catch trial performance
                    if cpdm_catch_trial == 1:
                        catch_trials.append(0)
                    #correct response is not random
                    if cpdm_gabor_orient != 0.0:
                        cpdm_trials.append(("CPDM", 6, "INCORRECT", "LOW"))
            elif key == "p":
                #RIGHT - HIGH correct
                if is_clockwise == True:
                    my_loop.addData("cpdm_conf2", "high")
                    my_loop.addData("cpdm_money", 13)
                    #catch trial performance
                    if cpdm_catch_trial == 1:
                        catch_trials.append(1)
                    #correct response is not random
                    if cpdm_gabor_orient != 0.0:
                        cpdm_trials.append(("CPDM", 13, "CORRECT", "HIGH"))
                #RIGHT - HIGH incorrect
                else:
                    my_loop.addData("cpdm_conf2", "high")
                    my_loop.addData("cpdm_money", 0)
                    #catch trial performance
                    if cpdm_catch_trial == 1:
                        catch_trials.append(0)
                    #correct response is not random
                    if cpdm_gabor_orient != 0.0:
                        cpdm_trials.append(("CPDM", 0, "INCORRECT", "HIGH"))
            elif key == "l":
                #RIGHT - LOW correct
                if is_clockwise == True:
                    my_loop.addData("cpdm_conf2", "low")
                    my_loop.addData("cpdm_money", 8)
                    #catch trial performance
                    if cpdm_catch_trial == 1:
                        catch_trials.append(1)
                    #correct response is not random
                    if cpdm_gabor_orient != 0.0:
                        cpdm_trials.append(("CPDM", 8, "CORRECT", "LOW"))
                #RIGHT - LOW incorrect
                else:
                    my_loop.addData("cpdm_conf2", "low")
                    my_loop.addData("cpdm_money", 6)
                    #catch trial performance
                    if cpdm_catch_trial == 1:
                        catch_trials.append(0)
                    #correct response is not random
                    if cpdm_gabor_orient != 0.0:
                        cpdm_trials.append(("CPDM", 6, "INCORRECT", "LOW"))
    GratingComponent cpdm_trial_gabor
      contrast [set every repeat] = cpdm_gabor_contrast
      mask = gauss
      ori [set every repeat] = cpdm_gabor_orient
      sf = 6
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      tex = sin
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    PolygonComponent cpdm_trial_left_high_poly
      fillColor [set every frame] = $left_high_color
      lineWidth = 15
      pos = (-0.45, 0.25)
      saveStartStop = False
      shape = rectangle
      size = (0.35, 0.35)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2
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    PolygonComponent cpdm_trial_right_high_poly
      fillColor [set every frame] = $right_high_color
      lineWidth = 15
      pos = (0.45, 0.25)
      saveStartStop = False
      shape = rectangle
      size = (0.35, 0.35)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2
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    PolygonComponent cpdm_trial_left_low_poly
      fillColor [set every frame] = $left_low_color
      lineWidth = 15
      pos = (-0.45, -0.25)
      saveStartStop = False
      shape = rectangle
      size = (0.35, 0.35)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2
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    PolygonComponent cpdm_trial_right_low_poly
      fillColor [set every frame] = $right_low_color
      lineWidth = 15
      pos = (0.45, -0.25)
      saveStartStop = False
      shape = rectangle
      size = (0.35, 0.35)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2
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    TextComponent cpdm_trial_left_high_txt
      letterHeight = 0.035
      pos = (-0.45, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2
      text [set every repeat] = $left_resp_txt
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    TextComponent cpdm_trial_right_high_txt
      letterHeight = 0.035
      pos = (0.45, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2
      text [set every repeat] = $right_resp_txt
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    TextComponent cpdm_trial_left_low_txt
      letterHeight = 0.035
      pos = (-0.45, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2
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      text:
        LEFT

        LOW Confidence

        \$8 or \$6
    TextComponent cpdm_trial_right_low_txt
      letterHeight = 0.035
      pos = (0.45, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2
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      text:
        RIGHT

        LOW Confidence

        \$8 or \$6
    KeyboardComponent cpdm_trial_resp
      allowedKeys = 'q', 'a', 'p', 'l'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2
      store = first key
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  Routine cpdm_bonus
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    CodeComponent cpdm_bonus_code
      Code Type = Auto->JS
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      Begin Routine:
        if random_exp == "cpdm":
            continueRoutine = True
        else:
            continueRoutine = False

        exp = []
        money = []
        acc = []
        conf = []
        acc_color = [0,0,0]
        idx = int(random.random() * len(cpdm_trials))
        #indexing example ("CPDM", 0, "INCORRECT", "HIGH")
        exp, money, acc, conf = cpdm_trials[idx]
        if random_exp == "cpdm":
            my_loop.addData("cpdm_bonus_amt", money)
            my_loop.addData("cpdm_bonus_acc", acc)
            my_loop.addData("cpdm_bonus_conf", conf)

        if acc == "CORRECT":
            acc_color = [0.1216, 0.4745, 0.1216]
        else:
            acc_color = [0.9608, 0.0039, -0.1059]
    TextComponent cpdm_bonus_thanks_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.35
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      text:
        Your randomly selected *bonus earnings trial* is from the
        Visual Decision Making Task!
    TextComponent cpdm_bonus_earnings_txt
      letterHeight = 0.04
      pos = (0, 0.10)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = In this trial, you earned:
      wrapWidth = 1.25
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    TextComponent cpdm_bonus_amt_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $str("$"+str(money))
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    TextComponent cpdm_bonus_answer_txt
      letterHeight = 0.04
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Your answer was
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    TextComponent cpdm_bonus_acc_txt
      color [set every repeat] = $acc_color
      letterHeight = 0.04
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $acc
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    TextComponent cpdm_bonus_and_txt
      letterHeight = 0.04
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = and
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    TextComponent cpdm_bonus_conf_txt
      color = 0.0588, 0.6157, 0.9608
      letterHeight = 0.04
      pos = (0, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $conf + " CONFIDENCE"
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    TextComponent cpdm_bonus_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to receive your *COMPLETION CODE*
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    KeyboardComponent cpdm_bonus_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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
  Routine crdm_pract_trial
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    CodeComponent crdm_pract_trial_code1
      Code Type = Auto->JS
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      Begin Experiment:
        #position of certain amount option
        sure_pos = []
        sure_resp = []
        crdm_msg = ""

        #stimuli positions and respective responses
        #left/right screen locations
        pos = [[-0.5, 0], [0.5, 0]]
        #1 = left, 2 = right
        resp = ["1", "2"]
      Begin Routine:
        my_loop = eval(practice_loop_name)

        #random index for certain outcome position and response
        idx = random.randint(0,1)
        sure_pos = pos[idx]
        sure_resp = resp[idx]
        sure_amt = 5

        #certain outcome screen position is left/right, lottery is opposite
        if idx == 0:
            lott_pos = pos[1]
        else:
            lott_pos = pos[0]
      End Routine:
        key = crdm_pract_trial_resp.keys
        sure_key = crdm_pract_trial_resp.corr

        my_loop.addData("crdm_trial_type", "practice")
    ImageComponent crdm_pract_trial_img
      image [set every repeat] = $"crdm/" + crdm_img
      saveStartStop = False
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent crdm_pract_trial_lott_top_txt
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $str("$"+str(crdm_lott_top))
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    TextComponent crdm_pract_trial_lott_bot_txt
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $str("$"+str(crdm_lott_bot))
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    TextComponent crdm_pract_trial_sure_amt_txt
      letterHeight = 0.06
      pos [set every repeat] = sure_pos
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text [set every repeat]:
        $str("$"+str(crdm_sure_amt))
    PolygonComponent crdm_pract_trial_cue
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, 1.0000, -1.0000
      saveStartStop = False
      shape = circle
      size = (0.04, 0.04)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
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    KeyboardComponent crdm_pract_trial_resp
      allowedKeys = '1', '2'
      correctAns = $sure_resp
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine crdm_feedback
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    CodeComponent crdm_feedback_code
      Code Type = Both
      Begin JS Routine:
        if ((key === undefined)) {
            crdm_msg = "NO RESPONSE";
        } else {
            if (sure_key) {
                crdm_msg = ("CERTAIN $" + sure_amt.toString());
            } else {
                crdm_msg = "PLAY THE LOTTERY";
            }
        }
      Begin Routine:
        #Ss did not respond
        if len(key) == 0:
            crdm_msg = "NO RESPONSE"
            #Ss chose sure $5
        elif sure_key:
            crdm_msg = "CERTAIN $" + str(sure_amt)
            #Ss chose lottery
        else:
            crdm_msg = "PLAY THE LOTTERY"
    TextComponent crdm_feedback_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $crdm_msg
      wrapWidth = 1.5
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  Routine crdm_conf
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    CodeComponent crdm_conf_code
      Code Type = Both
      Begin JS Routine:
        if ((key === undefined)) {
            continueRoutine = false;
        }
        conf1_color = [0, 0, 0];
        conf2_color = [0, 0, 0];
        conf3_color = [0, 0, 0];
        conf4_color = [0, 0, 0];
      Begin Routine:
        #Ss did not respond
        if len(key) == 0:
            continueRoutine = False

        #set default gray for all four response boxes
        conf1_color = [0, 0, 0]
        conf2_color = [0, 0, 0]
        conf3_color = [0, 0, 0]
        conf4_color = [0, 0, 0]
      Each Frame:
        #resp is received
        conf_key = crdm_conf_resp.keys
        if len(conf_key) == 1:
            #not at all confident
            if conf_key == "1":
                #change box color to indicate selection
                conf1_color = "darkgray"
                conf2_color = [0,0,0]
                conf3_color = [0,0,0]
                conf4_color = [0,0,0]
            #less confident
            elif conf_key == "2":
                conf1_color = [0,0,0]
                conf2_color = "darkgray"
                conf3_color = [0,0,0]
                conf4_color = [0,0,0]
            #somewhat confident
            elif conf_key == "3":
                conf1_color = [0,0,0]
                conf2_color = [0,0,0]
                conf3_color = "darkgray"
                conf4_color = [0,0,0]
            #very confident
            elif conf_key == "4":
                conf1_color = [0,0,0]
                conf2_color = [0,0,0]
                conf3_color = [0,0,0]
                conf4_color = "darkgray"
      Each JS Frame:
        conf_key = crdm_conf_resp.keys;
        if (!(conf_key === undefined) && (conf_key.length === 1)) {
            if ((conf_key === "1")) {
                conf1_color = "darkgray";
                conf2_color = [0, 0, 0];
                conf3_color = [0, 0, 0];
                conf4_color = [0, 0, 0];
            } else {
                if ((conf_key === "2")) {
                    conf1_color = [0, 0, 0];
                    conf2_color = "darkgray";
                    conf3_color = [0, 0, 0];
                    conf4_color = [0, 0, 0];
                } else {
                    if ((conf_key === "3")) {
                        conf1_color = [0, 0, 0];
                        conf2_color = [0, 0, 0];
                        conf3_color = "darkgray";
                        conf4_color = [0, 0, 0];
                    } else {
                        if ((conf_key === "4")) {
                            conf1_color = [0, 0, 0];
                            conf2_color = [0, 0, 0];
                            conf3_color = [0, 0, 0];
                            conf4_color = "darkgray";
                        }
                    }
                }
            }
        }
      End JS Routine:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        if (!(conf_key == undefined) && (conf_key.length === 1)) {
            if ((Array.isArray(conf_key))) {
                if (_pj.in_es6(conf_key.slice((- 1))[0], ["1", "2", "3", "4"])) {
                    crdm_conf_resps.push(conf_key);
                }
            } else {
                if (_pj.in_es6(conf_key, ["1", "2", "3", "4"])) {
                    crdm_conf_resps.push(conf_key);
                }
            }
        }
        conf1_color = [0, 0, 0];
        conf2_color = [0, 0, 0];
        conf3_color = [0, 0, 0];
        conf4_color = [0, 0, 0];

        crdm_conf1.setFillColor(new util.Color(conf1_color), false);
        crdm_conf2.setFillColor(new util.Color(conf2_color), false);
        crdm_conf3.setFillColor(new util.Color(conf3_color), false);
        crdm_conf4.setFillColor(new util.Color(conf4_color), false);
      End Routine:
        if len(conf_key) == 1:
            if type(conf_key) == list:
                if conf_key[-1] in ["1", "2", "3", "4"]:
                    crdm_conf_resps.append(conf_key)
            else:
                if conf_key in ["1", "2", "3", "4"]:
                    crdm_conf_resps.append(conf_key)
    TextComponent crdm_conf_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = How confident are you in your choice?
      wrapWidth = 1.5
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    PolygonComponent crdm_conf1
      fillColor [set every frame] = $conf1_color
      lineWidth = 10
      pos = (-0.6, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent crdm_conf1_txt
      letterHeight = 0.04
      pos = (-0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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      text:
        Not at all
        confident

        1
    PolygonComponent crdm_conf2
      fillColor [set every frame] = $conf2_color
      lineWidth = 10
      pos = (-0.2, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent crdm_conf2_txt
      letterHeight = 0.04
      pos = (-0.2, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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      text:
        Less
        confident

        2
    PolygonComponent crdm_conf3
      fillColor [set every frame] = $conf3_color
      lineWidth = 10
      pos = (0.2, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent crdm_conf3_txt
      letterHeight = 0.04
      pos = (0.2, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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      text:
        Somewhat
        confident

        3
    PolygonComponent crdm_conf4
      fillColor [set every frame] = $conf4_color
      lineWidth = 10
      pos = (0.6, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent crdm_conf4_txt
      letterHeight = 0.04
      pos = (0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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      text:
        Very
        confident

        4
    KeyboardComponent crdm_conf_resp
      allowedKeys = '1', '2', '3', '4'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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  Routine crdm_trial_instr
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    CodeComponent crdm_trial_instr_code
      Code Type = Auto->JS
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      Begin Routine:
        #Task QC check variables
        crdm_task_resps = []
        crdm_conf_resps = []
        catch_trials = []

        iti_list = [random.random() for i in range(80)]
        s = sum(iti_list)
        iti_list = [i*80/s for i in iti_list]
    TextComponent crdm_trial_instr_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Risk & Ambiguity Task *
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    TextComponent crdm_trial_instr_txt
      letterHeight = 0.03
      pos = (0, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        Now that you have practiced, the actual task will begin.

        Make your choice between the certain outcome and lottery as soon as you see the green circle. You will have 4 seconds to consider and 2 seconds to respond. You will then have an additional 2 seconds to rate your choice confidence.

        When a white cross appears, please focus your attention on the center of the screen.
    TextComponent crdm_trial_instr_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to begin.
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    KeyboardComponent crdm_trial_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_trial
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    CodeComponent crdm_trial_code
      Code Type = Both
      Begin Experiment:
        #used in variable ITI
        delta_time = 0
        #position of certain amount option
        sure_pos = []
        sure_resp = []
        crdm_msg = ""

        #stimuli positions and respective responses
        #left/right screen locations
        pos = [[-0.5, 0], [0.5, 0]]
        #1 = left, 2 = right
        resp = ["1", "2"]

        crdm_task_nonresp_ct = 0
        crdm_conf_nonresp_ct = 0
      Begin JS Experiment:
        delta_time = 0;
        sure_pos = [];
        sure_resp = [];
        crdm_msg = "";

        pos = [[(- 0.5), 0], [0.5, 0]];
        resp = ["1", "2"];

        crdm_task_nonresp_ct = 0;
        crdm_conf_nonresp_ct = 0;
      Begin JS Routine:
        my_loop = eval(loop_name);
        stop_timer = null;
        stopped_time = 0;
        lott_outcome = 0;
        conf_key = [];

        idx = random.randint(0, 1);
        sure_pos = pos[idx];
        sure_resp = resp[idx];
        sure_amt = 5;

        if ((idx === 0)) {
            lott_pos = pos[1];
        } else {
            lott_pos = pos[0];
        }
      Begin Routine:
        #variable for saving data
        my_loop = eval(loop_name)
        stop_timer = None
        stopped_time = 0
        lott_outcome = 0
        conf_key = []

        #random index for certain outcome position and response
        idx = random.randint(0,1)
        sure_pos = pos[idx]
        sure_resp = resp[idx]
        sure_amt = 5

        #certain outcome screen position is left/right, lottery is opposite
        if idx == 0:
            lott_pos = pos[1]
        else:
            lott_pos = pos[0]
      Each Frame:
        #Ss responded
        if len(crdm_trial_resp.keys) == 1:
            if stop_timer == None:
                stop_timer = core.Clock()
            else:
                if stop_timer.getTime() >= 0.5:
                    continueRoutine = False
      Each JS Frame:
        if (!(crdm_trial_resp.keys === undefined) && (crdm_trial_resp.keys.length === 1)) {
            if ((stop_timer === null)) {
                stop_timer = new util.Clock();
            } else {
                if ((stop_timer.getTime() >= 0.5)) {
                    continueRoutine = false;
                }
            }
        }
      End JS Routine:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        key = crdm_trial_resp.keys;
        sure_key = crdm_trial_resp.corr;
        my_loop.addData("crdm_trial_type", "task");
        if (_pj.in_es6(key, ["1", "2"])) {
            crdm_task_resps.push(key);
        }
        if ((((crdm_trial_resp.rt) === undefined) || (crdm_trial_resp.rt >= (2.2 - 0.5)))) {
            delta_time = 0;
        } else {
            delta_time = Math.max(0, (2 - (crdm_trial_resp.rt + stopped_time)));
        }
        if (!(crdm_trial_resp.keys === undefined) && (crdm_trial_resp.keys.length === 1)) {
            if ((sure_key === 1)) {
                if ((crdm_catch_trial === 1)) {
                    catch_trials.push(1);
                }
                crdm_trials.push(["CRDM", "sure", 5, crdm_img, crdm_lott_top, crdm_lott_bot, (- 1), crdm_win_side, crdm_domain]);
                my_loop.addData("crdm_choice", 0);
                my_loop.addData("crdm_choice2", "sure");
                my_loop.addData("crdm_lott", "");
                my_loop.addData("crdm_lott2", "");
            } else {
                if ((crdm_catch_trial === 1)) {
                    catch_trials.push(0);
                }
                lott_outcome = random.choices([0, 1], [100 - Number.parseInt(crdm_lott_p), Number.parseInt(crdm_lott_p)]);
                my_loop.addData("crdm_choice", 1);
                my_loop.addData("crdm_choice2", "lott");
                my_loop.addData("crdm_lott", lott_outcome);
                if ((lott_outcome === 1)) {
                    my_loop.addData("crdm_lott2", "win");
                    if ((Number.parseInt(crdm_lott_top) !== 0)) {
                        crdm_trials.push(["CRDM", "lott", crdm_lott_top, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_win_side, crdm_domain]);
                    } else {
                        crdm_trials.push(["CRDM", "lott", crdm_lott_bot, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_win_side, crdm_domain]);
                    }
                } else {
                    my_loop.addData("crdm_lott2", "lose");
                    crdm_trials.push(["CRDM", "lott", 0, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_win_side, crdm_domain]);
                }
            }
        }
      End Routine:
        #variable for feedback routine
        key = crdm_trial_resp.keys
        #1 if certain $ selected
        sure_key = crdm_trial_resp.corr
        my_loop.addData("crdm_trial_type", "task")
        if key in ["1", "2"]:
            crdm_task_resps.append(key)

        #delta time is leftover time excluding rt
        if type(crdm_trial_resp.rt) is list or crdm_trial_resp.rt >= 2 - 0.5:
            delta_time = 0
        else:
            delta_time = max(0, 2 - (crdm_trial_resp.rt + stopped_time))

        #pseudo-random chip draw using bag probabilities and store/record outcome
        #response received
        if len(key) == 1:
            #certain option
            if sure_key == 1:
                if crdm_catch_trial == 1:
                    catch_trials.append(1)
                #-1 is placeholder for lott_outcome
                crdm_trials.append(("CRDM", "sure", 5, crdm_img, crdm_lott_top, crdm_lott_bot, -1, crdm_win_side, crdm_domain))
                my_loop.addData("crdm_choice", 0)
                my_loop.addData("crdm_choice2", "sure")
                my_loop.addData("crdm_lott", "")
                my_loop.addData("crdm_lott2", "")
            #lottery option
            else:
                if crdm_catch_trial == 1:
                    catch_trials.append(0)
                #probability from bag parameters
                lott_outcome = random.choices([0,1], weights=[100-int(crdm_lott_p), int(crdm_lott_p)])[0]
                #record Ss choice
                my_loop.addData("crdm_choice", 1)
                my_loop.addData("crdm_choice2", "lott")
                #record lottery outcome
                my_loop.addData("crdm_lott", lott_outcome)
                #win
                if lott_outcome == 1:
                    my_loop.addData("crdm_lott2", "win")
                    #check which side was worth money
                    if int(crdm_lott_top) != 0:
                        #top side is winner
                        crdm_trials.append(("CRDM", "lott", crdm_lott_top, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_win_side, crdm_domain))
                    else:
                        #bottom side is winner
                        crdm_trials.append(("CRDM", "lott", crdm_lott_bot, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_win_side, crdm_domain))
                #lose
                else:
                    #losing lottery
                    my_loop.addData("crdm_lott2", "lose")
                    crdm_trials.append(("CRDM", "lott", 0, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_win_side, crdm_domain))
    ImageComponent crdm_trial_img
      image [set every repeat] = $"crdm/" + crdm_img
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent crdm_trial_lott_top
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $str("$"+str(crdm_lott_top))
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    TextComponent crdm_trial_lott_bot
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $str("$"+str(crdm_lott_bot))
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    TextComponent crdm_trial_sure_amt
      letterHeight = 0.06
      pos [set every repeat] = sure_pos
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $str("$"+str(crdm_sure_amt))
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    PolygonComponent crdm_trial_cue
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, 1.0000, -1.0000
      shape = circle
      size = (0.04, 0.04)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
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    KeyboardComponent crdm_trial_resp
      allowedKeys = '1', '2'
      correctAns = $sure_resp
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine crdm_end
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    CodeComponent crdm_end_code
      Code Type = Auto->JS
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      Begin Experiment:
        task_end_text = ""
        space_text = ""
      Begin Routine:
        unique_resps = []
        unique_count = 0
        for i in crdm_task_resps:
            if i not in unique_resps:
                unique_count += 1
                unique_resps.append(i)

        task_end_text = ""
        space_text = ""
        #filter for nonresponses
        if len(crdm_task_resps) < 76 or len(crdm_conf_resps) < 76: #95% = 76 trials
            if len(crdm_task_resps) < 76:
                task_end_text = "You failed to respond to " + str(80-len(crdm_task_resps)) + " task trials and did not meet the 95% response rate requirement. \n \n The IDM Study will now close and you will not be eligible to receive payment or a bonus."
            if len(crdm_conf_resps) < 76:
                task_end_text = "You failed to respond to both parts of " + str(80-len(crdm_conf_resps)) + " trials and did not meet the 95% response rate requirement. \n \n The IDM Study will now close and you will not be eligible to receive payment or a bonus."
            space_text = "Press SPACE to end."
            exp_proceed = False
            my_loop.addData("crdm_subReject1", "< 95% resp rate")
            my_loop.addData("crdm_subReject1_nonresps-task", 80-len(crdm_task_resps))
            my_loop.addData("crdm_subReject1_nonresps-conf", 80-len(crdm_conf_resps))
        #filter for single-button responses
        elif unique_count < 2: #same for each exp
            task_end_text = "You provided the same response to all " + str(len(crdm_task_resps)) + " trials. \n \n You did not follow task instructions. \n \n The IDM Study will now close and you will not be eligible to receive payment or a bonus."
            space_text = "Press SPACE to end."
            exp_proceed = False
            my_loop.addData("crdm_subReject2", "1key response")
            my_loop.addData("crdm_subReject2_key", crdm_task_resps[0])
        #filter for poor performance on CRDM catch trials (10/20 catch trials -- 0.097% of random success on 10 trials)
        elif sum(catch_trials) < 10:
            task_end_text = "Your performance on the previous trial block demonstrates you did not follow task instructions. \n \n The IDM Study will now close and you will not be eligible to receive payment or a bonus."
            space_text = "Press SPACE to end."
            exp_proceed = False
            my_loop.addData("crdm_subReject3", "catch fail")
            my_loop.addData("crdm_subReject3_fails", 20-sum(catch_trials))
        #all CRDM task trial criterion are met
        else:
            task_end_text = "You have completed the Risk & Ambiguity Task!"
            space_text = "Press SPACE to continue."
    TextComponent crdm_end_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Risk & Ambiguity Task *
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    TextComponent crdm_end_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $task_end_text
      wrapWidth = 1.35
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    TextComponent crdm_end_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $space_text
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    KeyboardComponent crdm_end_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cpdm_pract_iti1
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    CodeComponent cpdm_pract_iti1_code
      Code Type = Both
      Begin JS Routine:
        if (!(cpdm_pract_trials1.thisTrialN == undefined) && (cpdm_pract_trials1.thisTrialN === 4)) {
            continueRoutine = false;
        }
      Begin Routine:
        #5 CPDM practice trials
        if cpdm_pract_trials1.thisTrialN == 4:
            continueRoutine = False
    PolygonComponent cpdm_pract_iti1_poly
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine cpdm_trial_iti1
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    CodeComponent cpdm_trials_iti1_code
      Code Type = Both
      Begin JS Routine:
        iti_time = (iti_list[my_loop.thisIndex] + delta_time);
        if (!(cpdm_trials1.thisTrialN == undefined) && (cpdm_trials1.thisTrialN === 199)) {
            continueRoutine = false;
        }
      Begin Routine:
        #variable ITI for non-practice trials
        iti_time = iti_list[my_loop.thisIndex] + delta_time
        #200 CPDM trials per run
        if cpdm_trials1.thisTrialN == 199:
            continueRoutine = False
      End JS Routine:
        my_loop.addData("cpdm_delta_time", delta_time);
        my_loop.addData("cpdm_iti_time", iti_time);
      End Routine:
        #record delta time
        my_loop.addData("cpdm_delta_time", delta_time)
        #record iti time
        my_loop.addData("cpdm_iti_time", iti_time)
    PolygonComponent cpdm_trials_iti1_poly
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_time
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  Routine crdm_pract_iti1
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    CodeComponent crdm_pract_iti1_code
      Code Type = Both
      Begin JS Routine:
        if (!(crdm_pract_trials1.thisTrialN === undefined) && (crdm_pract_trials1.thisTrialN === 2)) {
            continueRoutine = false;
        }
      Begin Routine:
        #3 CRDM practice trials
        if crdm_pract_trials1.thisTrialN == 2:
            continueRoutine = False
    PolygonComponent crdm_pract_iti1_poly
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine crdm_trials_iti1
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    CodeComponent crdm_trials_iti1_code
      Code Type = Both
      Begin JS Routine:
        iti_time = (iti_list[my_loop.thisIndex] + delta_time);
        if (!(crdm_trials1.thisTrialN === undefined) && (crdm_trials1.thisTrialN === 79)) {
            continueRoutine = false;
        }
      Begin Routine:
        #variable ITI for non-practice trials
        iti_time = iti_list[my_loop.thisIndex] + delta_time
        #80 trials
        if crdm_trials1.thisTrialN == 79:
            continueRoutine = False
      End JS Routine:
        my_loop.addData("crdm_delta_time", delta_time);
        my_loop.addData("crdm_iti_time", iti_time);
      End Routine:
        #record delta time
        my_loop.addData("crdm_delta_time", delta_time)
        #record iti time
        my_loop.addData("crdm_iti_time", iti_time)
    PolygonComponent crdm_trials_iti1_poly
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_time
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  Routine cpdm_pract_iti2
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    CodeComponent cpdm_pract_iti2_code
      Code Type = Both
      Begin JS Routine:
        if (!(cpdm_pract_trials2.thisTrialN == undefined) && (cpdm_pract_trials2.thisTrialN === 4)) {
            continueRoutine = false;
        }
      Begin Routine:
        #5 CPDM practice trials
        if cpdm_pract_trials2.thisTrialN == 4:
            continueRoutine = False
    PolygonComponent cpdm_pract_iti_poly_2
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine cpdm_trials_iti2
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    CodeComponent cpdm_trials_iti2_code
      Code Type = Both
      Begin JS Routine:
        iti_time = (iti_list[my_loop.thisIndex] + delta_time);
        if (!(cpdm_trials2.thisTrialN == undefined) && (cpdm_trials2.thisTrialN === 199)) {
            continueRoutine = false;
        }
      Begin Routine:
        #variable ITI for non-practice trials
        iti_time = iti_list[my_loop.thisIndex] + delta_time
        #200 CPDM trials per run
        if cpdm_trials2.thisTrialN == 199:
            continueRoutine = False
      End JS Routine:
        my_loop.addData("cpdm_delta_time", delta_time);
        my_loop.addData("cpdm_iti_time", iti_time);
      End Routine:
        #record delta time
        my_loop.addData("cpdm_delta_time", delta_time)
        #record iti time
        my_loop.addData("cpdm_iti_time", iti_time)
    PolygonComponent cpdm_trials_iti2_poly
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_time
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  Routine cpdm_pract_iti3
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    CodeComponent cpdm_pract_iti3_code
      Code Type = Both
      Begin JS Routine:
        if (!(cpdm_pract_trials3.thisTrialN == undefined) && (cpdm_pract_trials3.thisTrialN === 4)) {
            continueRoutine = false;
        }
      Begin Routine:
        #3 CPDM practice trials
        if cpdm_pract_trials3.thisTrialN == 4:
            continueRoutine = False
    PolygonComponent cpdm_pract_iti3_poly
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine cpdm_trials_iti3
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    CodeComponent cpdm_trials_iti3_code
      Code Type = Both
      Begin JS Routine:
        iti_time = (iti_list[my_loop.thisIndex] + delta_time);
        if (!(cpdm_trials3.thisTrialN == undefined) && (cpdm_trials3.thisTrialN === 199)) {
            continueRoutine = false;
        }
      Begin Routine:
        #variable ITI for non-practice trials
        iti_time = iti_list[my_loop.thisIndex] + delta_time
        #200 CPDM trials per run
        if cpdm_trials3.thisTrialN == 199:
            continueRoutine = False
      End JS Routine:
        my_loop.addData("cpdm_delta_time", delta_time);
        my_loop.addData("cpdm_iti_time", iti_time);
      End Routine:
        #record delta time
        my_loop.addData("cpdm_delta_time", delta_time)
        #record iti time
        my_loop.addData("cpdm_iti_time", iti_time)
    PolygonComponent cpdm_trials_iti3_poly
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_time
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  Routine crdm_pract_iti2
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    CodeComponent crdm_pract_iti2_code
      Code Type = Both
      Begin JS Routine:
        if (!(crdm_pract_trials2.thisTrialN == undefined) && (crdm_pract_trials2.thisTrialN === 2)) {
            continueRoutine = false;
        }
      Begin Routine:
        #3 CRDM practice trials
        if crdm_pract_trials2.thisTrialN == 2:
            continueRoutine = False
    PolygonComponent crdm_pract_iti2_poly
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine crdm_trials_iti2
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    CodeComponent crdm_trials_iti2_code
      Code Type = Both
      Begin JS Routine:
        iti_time = (iti_list[my_loop.thisIndex] + delta_time);
        if (!(crdm_trials2.thisTrialN == undefined) && (crdm_trials2.thisTrialN === 79)) {
            continueRoutine = false;
        }
      Begin Routine:
        #variable ITI for non-practice trials
        iti_time = iti_list[my_loop.thisIndex] + delta_time

        if crdm_pract_trials2.thisTrialN == 79:
            continueRoutine = False
      End JS Routine:
        my_loop.addData("crdm_delta_time", delta_time);
        my_loop.addData("crdm_iti_time", iti_time);
      End Routine:
        #record delta time
        my_loop.addData("crdm_delta_time", delta_time)
        #record iti time
        my_loop.addData("crdm_iti_time", iti_time)
    PolygonComponent crdm_trials_iti2_poly
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_time
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  Routine cdd_pract_trial
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    CodeComponent cdd_pract_trial_code
      Code Type = Auto->JS
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      Begin Experiment:
        #position of immediate amt option
        immed_pos = []
        #which key is immediate amt option
        immed_resp = []
        cdd_msg = ""

        #stimuli positions and respective responses
        #left/right screen locations
        pos = [[-0.5, 0], [0.5, 0]]
        #1 = left, 2 = right
        resp = ['1', '2']
      Begin Routine:
        my_loop = eval(practice_loop_name)
        #random selection of position and resp key
        idx = random.randint(0,1)

        immed_pos = pos[idx]
        immed_resp = resp[idx]

        #immed is left side
        if idx == 0:
            #delay is right
            delay_pos = pos[1]
            #immed is right side
        else:
            #delay is left
            delay_pos = pos[0]
      End Routine:
        #Ss response
        key = cdd_pract_trial_resp.keys
        #1 when immediate amt is chosen
        immed_key = cdd_pract_trial_resp.corr
        my_loop.addData("cdd_trial_type", "practice")
    PolygonComponent cdd_pract_trial_left_poly
      fillColor = 0,0,0
      lineWidth = 10
      pos = (-0.5, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    PolygonComponent cdd_pract_trial_right_poly
      fillColor = 0,0,0
      lineWidth = 10
      pos = (0.5, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent cdd_pract_trial_prompt_txt
      letterHeight = 0.06
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Which would you prefer?
      wrapWidth = 1.25
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    TextComponent cdd_pract_trial_immed_txt
      letterHeight = 0.04
      pos [set every repeat] = immed_pos
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $str("$"+str(cdd_immed_amt)) + "\n" + "\n" + " TODAY"
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    TextComponent cdd_pract_trial_or_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = OR
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    TextComponent cdd_pract_trial_delay_txt
      letterHeight = 0.04
      pos [set every repeat] = delay_pos
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $str("$"+str(cdd_delay_amt)) + "\n" + "\n" + str(cdd_delay_wait) + " DAYS"
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    PolygonComponent cdd_pract_trial_cue
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, 1.0000, -1.0000
      saveStartStop = False
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
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    KeyboardComponent cdd_pract_trial_resp
      allowedKeys = '1', '2'
      correctAns = $immed_resp
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine cdd_feedback
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    CodeComponent cdd_feedback_code
      Code Type = Both
      Begin JS Routine:
        if ((key === undefined)) {
            cdd_msg = "NO RESPONSE";
        } else {
            if (immed_key) {
                cdd_msg = "$ NOW";
            } else {
                cdd_msg = "$ LATER";
            }
        }
      Begin Routine:
        #Ss did not respond
        if len(key) == 0:
            cdd_msg = "NO RESPONSE"
        #Ss chose smaller, immediate option
        elif immed_key:
            cdd_msg = "$ NOW"
        #Ss chose larger, delayed option
        else:
            cdd_msg = "$ LATER"
    TextComponent cdd_feedback_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $cdd_msg
      wrapWidth = 1.25
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  Routine cdd_conf
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    CodeComponent cdd_conf_code
      Code Type = Both
      Begin JS Routine:
        if ((key === undefined)) {
            continueRoutine = false;
        }
        conf1_color = [0, 0, 0];
        conf2_color = [0, 0, 0];
        conf3_color = [0, 0, 0];
        conf4_color = [0, 0, 0];
      Begin Routine:
        #Ss did not respond to choice trial
        if len(key) == 0:
            continueRoutine = False

        #set all 4 boxes as gray by default
        conf1_color = [0, 0, 0]
        conf2_color = [0, 0, 0]
        conf3_color = [0, 0, 0]
        conf4_color = [0, 0, 0]
      Each Frame:
        conf_key = cdd_conf_resp.keys
        #confidence rating received
        if len(conf_key) == 1:
            #not at all confident
            if conf_key == "1":
                conf1_color = "darkgray"
                conf2_color = [0, 0, 0]
                conf3_color = [0, 0, 0]
                conf4_color = [0, 0, 0]
            #less confident
            elif conf_key == "2":
                conf1_color = [0, 0, 0]
                conf2_color = "darkgray"
                conf3_color = [0, 0, 0]
                conf4_color = [0, 0, 0]
            #somewhat confident
            elif conf_key == "3":
                conf1_color = [0, 0, 0]
                conf2_color = [0, 0, 0]
                conf3_color = "darkgray"
                conf4_color = [0, 0, 0]
            #very confident
            elif conf_key == "4":
                conf1_color = [0, 0, 0]
                conf2_color = [0, 0, 0]
                conf3_color = [0, 0, 0]
                conf4_color = "darkgray"
      Each JS Frame:
        conf_key = cdd_conf_resp.keys;
        if (!(conf_key === undefined) && (conf_key.length === 1)) {
            if ((conf_key === "1")) {
                conf1_color = "darkgray";
                conf2_color = [0, 0, 0];
                conf3_color = [0, 0, 0];
                conf4_color = [0, 0, 0];
            } else {
                if ((conf_key === "2")) {
                    conf1_color = [0, 0, 0];
                    conf2_color = "darkgray";
                    conf3_color = [0, 0, 0];
                    conf4_color = [0, 0, 0];
                } else {
                    if ((conf_key === "3")) {
                        conf1_color = [0, 0, 0];
                        conf2_color = [0, 0, 0];
                        conf3_color = "darkgray";
                        conf4_color = [0, 0, 0];
                    } else {
                        if ((conf_key === "4")) {
                            conf1_color = [0, 0, 0];
                            conf2_color = [0, 0, 0];
                            conf3_color = [0, 0, 0];
                            conf4_color = "darkgray";
                        }
                    }
                }
            }
        }
      End JS Routine:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        if (!(conf_key == undefined) && (conf_key.length === 1)) {
            if ((Array.isArray(conf_key))) {
                if (_pj.in_es6(conf_key.slice((- 1))[0], ["1", "2", "3", "4"])) {
                    cdd_conf_resps.push(conf_key);
                }
            } else {
                if (_pj.in_es6(conf_key, ["1", "2", "3", "4"])) {
                    cdd_conf_resps.push(conf_key);
                }
            }
        }
        conf1_color = [0, 0, 0];
        conf2_color = [0, 0, 0];
        conf3_color = [0, 0, 0];
        conf4_color = [0, 0, 0];

        cdd_conf1.setFillColor(new util.Color(conf1_color), false);
        cdd_conf2.setFillColor(new util.Color(conf2_color), false);
        cdd_conf3.setFillColor(new util.Color(conf3_color), false);
        cdd_conf4.setFillColor(new util.Color(conf4_color), false);
      End Routine:
        if len(conf_key) == 1:
            if type(conf_key) == list:
                if conf_key[-1] in ["1", "2", "3", "4"]:
                    cdd_conf_resps.append(conf_key)
            else:
                if conf_key in ["1", "2", "3", "4"]:
                    cdd_conf_resps.append(conf_key)
    TextComponent cdd_conf_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = How confident are you in your choice?
      wrapWidth = 1.25
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    PolygonComponent cdd_conf1
      fillColor [set every frame] = $conf1_color
      lineWidth = 10
      pos = (-0.6, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent cdd_conf1_txt
      letterHeight = 0.04
      pos = (-0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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      text:
        Not at all
        confident

        1
    PolygonComponent cdd_conf2
      fillColor [set every frame] = $conf2_color
      lineWidth = 10
      pos = (-0.2, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent cdd_conf2_txt
      letterHeight = 0.04
      pos = (-0.2, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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      text:
        Less
        confident

        2
    PolygonComponent cdd_conf3
      fillColor [set every frame] = $conf3_color
      lineWidth = 10
      pos = (0.2, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent cdd_conf3_txt
      letterHeight = 0.04
      pos = (0.2, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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      text:
        Somewhat
        confident

        3
    PolygonComponent cdd_conf4
      fillColor [set every frame] = $conf4_color
      lineWidth = 10
      pos = (0.6, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent cdd_conf4_txt
      letterHeight = 0.04
      pos = (0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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      text:
        Very
        confident

        4
    KeyboardComponent cdd_conf_resp
      allowedKeys = '1', '2', '3', '4'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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  Routine cdd_pract_iti1
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    CodeComponent cdd_pract_iti1_code
      Code Type = Both
      Begin JS Routine:
        if (!(cdd_pract_trials1.thisTrialN === undefined) && (cdd_pract_trials1.thisTrialN === 2)) {
            continueRoutine = false;
        }
      Begin Routine:
        #3 CDD practice trials
        if cdd_pract_trials1.thisTrialN == 2:
            continueRoutine = False
    PolygonComponent cdd_pract_iti1_poly
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine cdd_trial_instr
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    CodeComponent cdd_trial_instr_code
      Code Type = Auto->JS
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      Begin Routine:
        #QC check
        cdd_task_resps = []
        cdd_conf_resps = []
        catch_trials = []

        #variable ITI list creation
        iti_list = [random.random() for i in range(96)]
        s = sum(iti_list)
        iti_list = [i*96/s for i in iti_list]
    TextComponent cdd_trial_instr_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Delay Discounting Task *
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    TextComponent cdd_trial_instr_txt
      letterHeight = 0.03
      pos = (0, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        Now that you have practiced, the actual task will begin.

        Remember to make your choice between the immediate and delayed amounts when you see the green circle. You will have 4 seconds to consider both options and 2 seconds to make your choice. After each choice, you will be given 2 seconds to rate your choice confidence.

        When a white cross appears, please focus your attention on the center of the screen.
    TextComponent cdd_trial_instr_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent cdd_trial_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cdd_trial
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    CodeComponent cdd_trial_code
      Code Type = Both
      Begin Experiment:
        delta_time = 0

        #position of immediate reward option
        immed_pos = []
        #button for immediate reward option
        immed_resp = []
        cdd_msg = ""

        #left/right screen positions
        pos = [[-0.5, 0], [0.5, 0]]
        #left/right response mapping
        resp = ['1', '2']

        cdd_task_nonresp_ct = 0
        cdd_conf_nonresp_ct = 0
      Begin JS Experiment:
        delta_time = 0;
        immed_pos = [];
        immed_resp = [];
        cdd_msg = "";
        pos = [[(- 0.5), 0], [0.5, 0]];
        resp = ["1", "2"];

        cdd_task_nonresp_ct = 0;
        cdd_conf_nonresp_ct = 0;
      Begin JS Routine:
        my_loop = eval(loop_name);
        stop_timer = null;
        stopped_time = 0;
        conf_key = [];
        idx = random.randint(0, 1);
        immed_pos = pos[idx];
        immed_resp = resp[idx];
        if ((idx === 0)) {
            delay_pos = pos[1];
        } else {
            delay_pos = pos[0];
        }
      Begin Routine:
        my_loop = eval(loop_name)
        stop_timer = None
        stopped_time = 0
        conf_key = []

        #random integer to determine side of immediate option
        idx = random.randint(0,1)
        immed_pos = pos[idx]
        immed_resp = resp[idx]

        #immed position is left, delay is right
        if idx == 0:
            delay_pos = pos[1]
        else:
            delay_pos = pos[0]
      Each Frame:
        #Ss responded
        if len(cdd_trial_resp.keys) == 1:
            if stop_timer == None:
                stop_timer = core.Clock()
            else:
                stopped_time = stop_timer.getTime()
                if stopped_time >= 0.5:
                    continueRoutine = False
      Each JS Frame:
        if (!(cdd_trial_resp.keys === undefined) && (cdd_trial_resp.keys.length === 1)) {
            if ((stop_timer === null)) {
                stop_timer = new util.Clock();
            } else {
                stopped_time = stop_timer.getTime();
                if ((stopped_time >= 0.5)) {
                    continueRoutine = false;
                }
            }
        }
      End JS Routine:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        key = cdd_trial_resp.keys;
        immed_key = cdd_trial_resp.corr;
        my_loop.addData("cdd_trial_type", "task");
        if (_pj.in_es6(key, ["1", "2"])) {
            cdd_task_resps.push(key);
        }
        if ((((cdd_trial_resp.rt) === undefined) || (cdd_trial_resp.rt >= (2.2 - 0.5)))) {
            delta_time = 0;
        } else {
            delta_time = Math.max(0, (2 - (cdd_trial_resp.rt + stopped_time)));
        }
        if (!(key === undefined) && (key.length === 1)) {
            if ((immed_key === 1)) {
                if ((cdd_catch_trial === 1)) {
                    catch_trials.push(1);
                }
                my_loop.addData("cdd_choice", 0);
                my_loop.addData("cdd_choice2", "immed");
                cdd_trials.push(["CDD", "immed", cdd_immed_amt, cdd_immed_wait, cdd_delay_amt, cdd_delay_wait]);
            } else {
                if ((cdd_catch_trial === 1)) {
                    catch_trials.push(0);
                }
                my_loop.addData("cdd_choice", 1);
                my_loop.addData("cdd_choice2", "delay");
                cdd_trials.push(["CDD", "delay", cdd_immed_amt, cdd_immed_wait, cdd_delay_amt, cdd_delay_wait]);
            }
        }
      End Routine:
        key = cdd_trial_resp.keys
        #1 if immed option chosen
        immed_key = cdd_trial_resp.corr
        my_loop.addData("cdd_trial_type", "task")
        if key in ["1", "2"]:
            cdd_task_resps.append(key)

        if type(cdd_trial_resp.rt) is list or cdd_trial_resp.rt >= 2 - 0.5:
            delta_time = 0
        #Ss responded and not near end of resp window
        else:
            delta_time = max(0, 2 - (cdd_trial_resp.rt + stopped_time))

        #record info to cdd_trials variable
        #response trial
        if len(key) == 1:
            #Ss chose immed
            if immed_key == 1:
                if cdd_catch_trial == 1:
                    catch_trials.append(1)
                my_loop.addData("cdd_choice", 0)
                my_loop.addData("cdd_choice2", "immed")
                cdd_trials.append(("CDD", "immed", cdd_immed_amt, cdd_immed_wait, cdd_delay_amt, cdd_delay_wait))
            #Ss chose delay
            else:
                if cdd_catch_trial == 1:
                    catch_trials.append(0)
                my_loop.addData("cdd_choice", 1)
                my_loop.addData("cdd_choice2", "delay")
                cdd_trials.append(("CDD", "delay", cdd_immed_amt, cdd_immed_wait, cdd_delay_amt, cdd_delay_wait))
    PolygonComponent cdd_trial_left_poly
      fillColor = 0,0,0
      lineWidth = 10
      pos = (-0.5, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    PolygonComponent cdd_trial_right_poly
      fillColor = 0,0,0
      lineWidth = 10
      pos = (0.5, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent cdd_trial_prompt_txt
      letterHeight = 0.06
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Which would you prefer?
      wrapWidth = 1.25
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    TextComponent cdd_trial_immed_txt
      letterHeight = 0.04
      pos [set every repeat] = immed_pos
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $str("$"+str(cdd_immed_amt)) + "\n" + "\n" + " TODAY"
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    TextComponent cdd_trial_or_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = OR
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    TextComponent cdd_trial_delay_txt
      letterHeight = 0.04
      pos [set every repeat] = delay_pos
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $str("$"+str(cdd_delay_amt)) + "\n" + "\n" + str(cdd_delay_wait) + " DAYS"
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    PolygonComponent cdd_trial_cue
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, 1.0000, -1.0000
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
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    KeyboardComponent cdd_trial_resp
      allowedKeys = '1', '2'
      correctAns = $immed_resp
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine cdd_trial_iti1
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    CodeComponent cdd_trial_iti1_code
      Code Type = Both
      Begin JS Routine:
        iti_time = (iti_list[my_loop.thisIndex] + delta_time);
        if (!(cdd_trials1.thisTrialN === undefined) && (cdd_trials1.thisTrialN === 95)) {
            continueRoutine = false;
        }
      Begin Routine:
        #variable ITI for non-practice trials
        iti_time = iti_list[my_loop.thisIndex] + delta_time
        #90 trials in CDD task
        if cdd_trials1.thisTrialN == 95:
            continueRoutine = False
      End JS Routine:
        my_loop.addData("cdd_delta_time", delta_time);
        my_loop.addData("cdd_iti_time", iti_time);
      End Routine:
        my_loop.addData("cdd_delta_time", delta_time)
        my_loop.addData("cdd_iti_time", iti_time)
    PolygonComponent cdd_trial_iti1_poly
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 1.0000, 1.0000, 1.0000
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_time
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  Routine cdd_end
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    CodeComponent cdd_end_code
      Code Type = Auto->JS
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      Begin Experiment:
        task_end_text = ""
        space_text = ""
      Begin Routine:
        unique_resps = []
        unique_count = 0
        for i in cdd_task_resps:
            if i not in unique_resps:
                unique_count += 1
                unique_resps.append(i)

        task_end_text = ""
        space_text = ""
        #filter for nonresponses
        if len(cdd_task_resps) < 91 or len(cdd_conf_resps) < 91: #95% of 96 CDD trials
            if len(cdd_task_resps) < 91:
                task_end_text = "You failed to respond to " + str(96-len(cdd_task_resps)) + " task trials and did not meet the 95% response rate requirement. \n \n The IDM Study will now close and you will not be eligible to receive payment or a bonus."
            if len(cdd_conf_resps) < 91:
                task_end_text = "You failed to respond to both parts of " + str(96-len(cdd_conf_resps)) + " trials and did not meet the 95% response rate requirement. \n \n The IDM Study will now close and you will not be eligible to receive payment or a bonus."
            space_text = "Press SPACE to end."
            exp_proceed = False
            my_loop.addData("cdd_subReject1", "< 95% resp rate")
            my_loop.addData("cdd_subReject1_nonresps", 96-len(cdd_task_resps))
        #filter for single-button responses
        elif unique_count < 2: #same for each exp
            task_end_text = "You provided the same response to all " + str(len(cdd_task_resps)) + " trials. \n \n You did not follow task instructions. \n \n The IDM Study will now close and you will not be eligible to receive payment or a bonus."
            space_text = "Press SPACE to end."
            exp_proceed = False
            my_loop.addData("cdd_subReject2", "1key response")
            my_loop.addData("cdd_subReject2_key", cdd_task_resps[0])
        #filter for poor performance on CDD catch trials (5/6 catch trials -- 3.125% of random success on 5 trials)
        elif sum(catch_trials) < 5:
            task_end_text = "Your performance on the previous trial block demonstrates you did not follow task instructions. \n \n The IDM Study will now close and you will not be eligible to receive payment or a bonus."
            space_text = "Press SPACE to end."
            exp_proceed = False
            my_loop.addData("cdd_subReject3", "catch fail")
            my_loop.addData("cdd_subReject3_fails", 6-sum(catch_trials))
        #all CDD task trial criterion are met
        else:
            task_end_text = "You have completed the Delay Discounting Task!"
            space_text = "Press SPACE to continue."
    TextComponent cdd_end_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Delay Discounting Task *
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    TextComponent cdd_end_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $task_end_text
      wrapWidth = 1.35
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    TextComponent cdd_end_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $space_text
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    KeyboardComponent cdd_end_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cdd_pract_iti2
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    CodeComponent cdd_pract_iti2_code
      Code Type = Both
      Begin JS Routine:
        if (!(cdd_pract_trials2.thisTrialN == undefined) && (cdd_pract_trials2.thisTrialN === 2)) {
            continueRoutine = false;
        }
      Begin Routine:
        #3 CDD practice trials
        if cdd_pract_trials2.thisTrialN == 2:
            continueRoutine = False
    PolygonComponent cdd_pract_iti2_poly
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      units = norm
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  Routine cdd_trial_iti2
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    CodeComponent cdd_trial_iti2_code
      Code Type = Both
      Begin JS Routine:
        iti_time = (iti_list[my_loop.thisIndex] + delta_time);
        if (!(cdd_trials2.thisTrialN == undefined) && (cdd_trials2.thisTrialN === 89)) {
            continueRoutine = false;
        }
      Begin Routine:
        #variable ITI for non-practice trials
        iti_time = iti_list[my_loop.thisIndex] + delta_time

        #90 trials in CDD task
        if cdd_trials2.thisTrialN == 89:
            continueRoutine = False
      End JS Routine:
        my_loop.addData("cdd_delta_time", delta_time);
        my_loop.addData("cdd_iti_time", iti_time);
      End Routine:
        my_loop.addData("cdd_delta_time", delta_time)
        my_loop.addData("cdd_iti_time", iti_time)
    PolygonComponent cdd_trial_iti2_poly
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 1.0000, 1.0000, 1.0000
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_time
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  Routine cdd_bonus
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    CodeComponent cdd_bonus_code
      Code Type = Auto->JS
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      Begin Routine:
        if random_exp == "cdd":
            continueRoutine = True
        else:
            continueRoutine = False

        exp = []
        choice = []
        choice_amt = []
        choice_wait = []
        other_amt = []
        other_wait = []
        choice_text = ""
        other_text = ""

        idx = int(random.random() * len(cdd_trials))
        #("CDD", "immed", immed_amt, immed_wait, delay_amt, delay_wait)
        #Ss chose immediate amount on selected bonus trial
        if cdd_trials[idx][1] == "immed":
            exp, choice, choice_amt, choice_wait, other_amt, other_wait = cdd_trials[idx]
            choice_text = "$" + str(choice_amt) + " TODAY"
            other_text = "$" + str(other_amt) + " in " + str(other_wait) + " DAYS"
            if random_exp == "cdd":
                my_loop.addData("cdd_bonus_choice", choice)
                my_loop.addData("cdd_bonus_amt", choice_amt)
                my_loop.addData("cdd_bonus_delay", choice_wait)
        #Ss chose delay amount on selected bonus trial
        else:
            exp, choice, other_amt, other_wait, choice_amt, choice_wait = cdd_trials[idx]
            choice_text = "$" + str(choice_amt) + " in " + str(choice_wait) + " DAYS"
            other_text = "$" + str(other_amt) + " TODAY"
            if random_exp == "cdd":
                my_loop.addData("cdd_bonus_choice", choice)
                my_loop.addData("cdd_bonus_amt", choice_amt)
                my_loop.addData("cdd_bonus_delay", choice_wait)
    TextComponent cdd_bonus_thanks_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.35
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      text:
        Your randomly selected *bonus earnings trial* is from the
        Delay Discounting Task!
    TextComponent cdd_bonus_box
      letterHeight = 0.04
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = In this trial, you chose to receive:
      wrapWidth = 1.25
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    TextComponent cdd_bonus_choice_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $choice_text
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    TextComponent cdd_bonus_rather_txt
      letterHeight = 0.04
      pos = (0, -0.125)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = rather than
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    TextComponent cdd_bonus_other_txt
      color = 0.9608, 0.0039, -0.1059
      letterHeight = 0.055
      pos = (0, -0.225)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $other_text
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    TextComponent cdd_bonus_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to receive your *COMPLETION CODE*
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    KeyboardComponent cdd_bonus_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cpdm_run_break2
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    CodeComponent cpdm_run_break2_code
      Code Type = Auto->JS
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      Begin Experiment:
        run_break_text = ""
        space_text = ""
      Begin Routine:
        unique_resps = []
        unique_count = 0
        for i in run_resps:
            if i not in unique_resps:
                unique_count += 1
                unique_resps.append(i)

        run_break_text = ""
        space_text = ""
        #filter for nonresponses
        if len(run_resps) < 190: #95% = 190 trials per block
            run_break_text = "You failed to respond to " + str(200-len(run_resps)) + " trials and did not meet the 95% response rate requirement. \n \n The IDM Study will now close and you will not be eligible to receive payment or a bonus."
            space_text = "Press SPACE to end."
            exp_proceed = False
            my_loop.addData("cpdm_subReject1", "< 95% resp rate")
            my_loop.addData("cpdm_subReject1_nonresps", 200-len(run_resps))
        #filter for single-button responses
        elif unique_count < 2: #same for each exp
            run_break_text = "You provided the same response to all " + str(len(run_resps)) + " trials. \n \n You did not follow task instructions. \n \n The IDM Study will now close and you will not be eligible to receive payment or a bonus."
            space_text = "Press SPACE to end."
            exp_proceed = False
            my_loop.addData("cpdm_subReject2", "1key response")
            my_loop.addData("cpdm_subReject2_key", run_resps[0])
        #filter for poor performance on CPDM catch trials for low volatility blocks (14/20 catch trial criterion -- 5.77% of random success on 14/20 trials)
        elif "low_vol" in cpdm_run_dimension and sum(catch_trials) < 14:
            run_break_text = "Your performance on the previous trial block demonstrates you did not follow task instructions. \n \n The IDM Study will now close and you will not be eligible to receive payment or a bonus."
            space_text = "Press SPACE to end."
            exp_proceed = False
            my_loop.addData("cpdm_subReject3LV", "LV catch fail")
            my_loop.addData("cpdm_subReject3LV_fails", 20-sum(catch_trials))
        #filter for poor performance on CPDM catch trials for high volatility blocks (6/8 catch trial criterion -- 14.45% of random success on 7/8 trials)
        elif "high_vol" in cpdm_run_dimension and sum(catch_trials) < 6:
            run_break_text = "Your performance on the previous trial block demonstrates you did not follow task instructions. \n \n The IDM Study will now close and you will not be eligible to receive payment or a bonus."
            space_text = "Press SPACE to end."
            exp_proceed = False
            my_loop.addData("subReject3HV", "HV catch fail")
            my_loop.addData("subReject3HV_fails", 8-sum(catch_trials))
        #all CPDM criterion are met -- good data
        else:
            #final run
            if condition_runs2.thisN == 3:
                run_break_text = "You have completed the Visual Decision Making Task!"
                space_text = "Press SPACE to continue."
            #first three runs
            else:
                run_break_text = "Please feel free to take a short break. \n \n As you begin Block " + str(run_counter) + ", read the possible monetary values of each option carefully as they may have changed."
                space_text = "Press SPACE to continue."
    TextComponent cpdm_run_break2_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Visual Decision Making Task *
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    TextComponent cpdm_run_break2_txt
      letterHeight [set every repeat] = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $run_break_text
      wrapWidth = 1.35
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    TextComponent cpdm_run_break2_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $space_text
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    KeyboardComponent cpdm_run_break2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cpdm_run_break3
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    CodeComponent cpdm_run_break3_code
      Code Type = Auto->JS
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      Begin Experiment:
        run_break_text = ""
        space_text = ""
      Begin Routine:
        unique_resps = []
        unique_count = 0
        for i in run_resps:
            if i not in unique_resps:
                unique_count += 1
                unique_resps.append(i)

        run_break_text = ""
        space_text = ""
        #filter for nonresponses
        if len(run_resps) < 190: #95% = 190 trials per block
            run_break_text = "You failed to respond to " + str(200-len(run_resps)) + " trials and did not meet the 95% response rate requirement. \n \n The IDM Study will now close and you will not be eligible to receive payment or a bonus."
            space_text = "Press SPACE to end."
            exp_proceed = False
            my_loop.addData("cpdm_subReject1", "< 95% resp rate")
            my_loop.addData("cpdm_subReject1_nonresps", 200-len(run_resps))
        #filter for single-button responses
        elif unique_count < 2: #same for each exp
            run_break_text = "You provided the same response to all " + str(len(run_resps)) + " trials. \n \n You did not follow task instructions. \n \n The IDM Study will now close and you will not be eligible to receive payment or a bonus."
            space_text = "Press SPACE to end."
            exp_proceed = False
            my_loop.addData("cpdm_subReject2", "1key response")
            my_loop.addData("cpdm_subReject2_key", run_resps[0])
        #filter for poor performance on CPDM catch trials for low volatility blocks (14/20 catch trial criterion -- 5.77% of random success on 14/20 trials)
        elif "low_vol" in cpdm_run_dimension and sum(catch_trials) < 14:
            run_break_text = "Your performance on the previous trial block demonstrates you did not follow task instructions. \n \n The IDM Study will now close and you will not be eligible to receive payment or a bonus."
            space_text = "Press SPACE to end."
            exp_proceed = False
            my_loop.addData("cpdm_subReject3LV", "LV catch fail")
            my_loop.addData("cpdm_subReject3LV_fails", 20-sum(catch_trials))
        #filter for poor performance on CPDM catch trials for high volatility blocks (6/8 catch trial criterion -- 14.45% of random success on 7/8 trials)
        elif "high_vol" in cpdm_run_dimension and sum(catch_trials) < 6:
            run_break_text = "Your performance on the previous trial block demonstrates you did not follow task instructions. \n \n The IDM Study will now close and you will not be eligible to receive payment or a bonus."
            space_text = "Press SPACE to end."
            exp_proceed = False
            my_loop.addData("subReject3HV", "HV catch fail")
            my_loop.addData("subReject3HV_fails", 8-sum(catch_trials))
        #all CPDM criterion are met -- good data
        else:
            #final run
            if condition_runs3.thisN == 3:
                run_break_text = "You have completed the Visual Decision Making Task!"
                space_text = "Press SPACE to continue."
            #first three runs
            else:
                run_break_text = "Please feel free to take a short break. \n \n As you begin Block " + str(run_counter) + ", read the possible monetary values of each option carefully as they may have changed."
                space_text = "Press SPACE to continue."
    TextComponent cpdm_run_break3_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Visual Decision Making Task *
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    TextComponent cpdm_run_break3_txt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $run_break_text
      wrapWidth = 1.35
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    TextComponent cpdm_run_break3_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $space_text
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    KeyboardComponent cpdm_run_break3_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cpdm_run_break1
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    CodeComponent cpdm_run_break1_code
      Code Type = Auto->JS
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      Begin Experiment:
        run_break_text = ""
        space_text = ""
      Begin Routine:
        unique_resps = []
        unique_count = 0
        for i in run_resps:
            if i not in unique_resps:
                unique_count += 1
                unique_resps.append(i)

        run_break_text = ""
        space_text = ""
        #filter for nonresponses
        if len(run_resps) < 190: #95% = 190 trials per block
            run_break_text = "You failed to respond to " + str(200-len(run_resps)) + " trials and did not meet the 95% response rate requirement. \n \n The IDM Study will now close and you will not be eligible to receive payment or a bonus."
            space_text = "Press SPACE to end."
            exp_proceed = False
            my_loop.addData("cpdm_subReject1", "< 95% resp rate")
            my_loop.addData("cpdm_subReject1_nonresps", 200-len(run_resps))
        #filter for single-button responses
        elif unique_count < 2: #same for each exp
            run_break_text = "You provided the same response to all " + str(len(run_resps)) + " trials. \n \n You did not follow task instructions. \n \n The IDM Study will now close and you will not be eligible to receive payment or a bonus."
            space_text = "Press SPACE to end."
            exp_proceed = False
            my_loop.addData("cpdm_subReject2", "1key response")
            my_loop.addData("cpdm_subReject2_key", run_resps[0])
        #filter for poor performance on CPDM catch trials for low volatility blocks (14/20 catch trial criterion -- 5.77% of random success on 14/20 trials)
        elif "low_vol" in cpdm_run_dimension and sum(catch_trials) < 14:
            run_break_text = "Your performance on the previous trial block demonstrates you did not follow task instructions. \n \n The IDM Study will now close and you will not be eligible to receive payment or a bonus."
            space_text = "Press SPACE to end."
            exp_proceed = False
            my_loop.addData("cpdm_subReject3LV", "LV catch fail")
            my_loop.addData("cpdm_subReject3LV_fails", 20-sum(catch_trials))
        #filter for poor performance on CPDM catch trials for high volatility blocks (6/8 catch trial criterion -- 14.45% of random success on 7/8 trials)
        elif "high_vol" in cpdm_run_dimension and sum(catch_trials) < 6:
            run_break_text = "Your performance on the previous trial block demonstrates you did not follow task instructions. \n \n The IDM Study will now close and you will not be eligible to receive payment or a bonus."
            space_text = "Press SPACE to end."
            exp_proceed = False
            my_loop.addData("subReject3HV", "HV catch fail")
            my_loop.addData("subReject3HV_fails", 8-sum(catch_trials))
        #all CPDM criterion are met -- good data
        else:
            #final run
            if condition_runs1.thisN == 3:
                run_break_text = "You have completed the Visual Decision Making Task!"
                space_text = "Press SPACE to continue."
            #first three runs
            else:
                run_break_text = "Please feel free to take a short break. \n \n As you begin Block " + str(run_counter) + ", read the possible monetary values of each option carefully as they may have changed."
                space_text = "Press SPACE to continue."
    TextComponent cpdm_run_break1_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Visual Decision Making Task *
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    TextComponent cpdm_run_break_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $run_break_text
      wrapWidth = 1.35
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    TextComponent cpdm_run_break1_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $space_text
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    KeyboardComponent cpdm_run_break_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine idm_comp_code
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    CodeComponent idm_code_code
      Code Type = Auto->JS
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      Begin Experiment:
        comp_code = ""
      Begin Routine:
        #completion code origination is now a 6 digit randomized code
        #previously linked to participant ID#
        comp_code = random.randint(100000, 999999)
        my_loop.addData("completion_code", comp_code)
    TextComponent idm_comp_code_header_txt
      letterHeight = 0.05
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Thank you for your participation!
        Your IDM Task Completion Code is:
    TextComponent idm_comp_code_num_txt
      color = 0.1216, 0.4745, 0.1216
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $comp_code
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    TextComponent idm_comp_code_instr_txt
      letterHeight = 0.04
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Return to Amazon Mechanical Turk and enter the completion code to receive credit for your participation and ensure payment.
      wrapWidth = 1.25
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    TextComponent idm_comp_code_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to exit session.
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    KeyboardComponent idm_comp_code_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_pract_instr
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    TextComponent crdm_pract_instr_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Risk & Ambiguity Task *
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    TextComponent crdm_pract_instr_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        Let's practice!

        When the green circle appears, indicate your decision by pressing 1 for the left option and 2 for the right option. Next, you will rate your confidence.
    TextComponent crdm_pract_instr_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to begin.
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    KeyboardComponent crdm_pract_instr_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cdd_pract_instr
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    PolygonComponent cdd_pract_instr_left_poly
      fillColor = 0, 0, 0
      lineWidth = 10
      pos = (-0.5, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    PolygonComponent cdd_pract_instr_right_poly
      fillColor = 0, 0, 0
      lineWidth = 10
      pos = (0.5, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent cdd_pract_instr_txt
      letterHeight = 0.05
      pos = (0, 0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        *EXAMPLE TRIAL*

        Which would you prefer?








        Let's practice!
    TextComponent cdd_pract_instr_immed_txt
      letterHeight = 0.04
      pos = (0.5, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        \$10

        TODAY
    TextComponent cdd_pract_instr_delay_txt
      letterHeight = 0.04
      pos = (-0.5, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        \$50

        9 DAYS
    TextComponent cdd_pract_instr_or_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = OR
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    TextComponent cdd_pract_instr_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent cdd_pract_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cpdm_instr1
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    ImageComponent cpdm_instr1_img
      image = cpdm/cpdm_keys.png
      pos = (0, -0.06)
      saveStartStop = False
      size = (0.65, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent cpdm_instr1_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Visual Decision Making Task *
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    TextComponent cpdm_instr1_txt
      letterHeight = 0.0325
      pos = (0, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.35
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      text:
        You will be presented with a series of oriented patterns across multiple trials. Your job is to decide if the pattern is tilting to the left or right. In your response, you will also indicate how confident you are in your decision.
        There are four possible response combinations:










        For each trial, you will have 2 seconds to respond.
    TextComponent cpdm_instr1_Q_txt
      color = 1.0000, 0.6863, -1.0000
      letterHeight = 0.025
      pos = (-0.3, 0.07)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Press Q for LEFT tilt and HIGH confidence
    TextComponent cpdm_instr1_P_txt
      color = 1.0000, 0.6863, -1.0000
      letterHeight = 0.025
      pos = (0.3, 0.07)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Press P for RIGHT tilt and HIGH confidence
    TextComponent cpdm_instr1_A_txt
      color = 1.0000, 0.6863, -1.0000
      letterHeight = 0.025
      pos = (-0.3, -0.225)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Press A for LEFT tilt and LOW confidence
    TextComponent cpdm_instr1_L_txt
      color = 1.0000, 0.6863, -1.0000
      letterHeight = 0.025
      pos = (0.3, -0.225)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Press L for RIGHT tilt and LOW confidence
    TextComponent cpdm_instr1_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent cpdm_instr1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_instr1
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    TextComponent crdm_instr1_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Risk & Ambiguity Task *
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    TextComponent crdm_instr1_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        In this decision making task, you will be asked to make economic choices between:

        - Receiving a certain, smaller amount of money
        OR
        - Playing a lottery for the chance to win a larger amount of money

        Your choice for each trial will determine how much money you could earn if randomly selected as your bonus earnings trial.
    TextComponent crdm_instr1_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_instr2
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    TextComponent crdm_instr2_lottname_txt
      letterHeight = 0.05
      pos = (-0.2, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = *Playing the Lottery*
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    TextComponent crdm_instr2_txt
      letterHeight = 0.03
      pos = (-0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        The lottery consists of an imaginary bag containing 100 poker chips, some red and some blue. To play, you pull a random chip from the bag.

        The figure on the left represents the proportion of blue and red chips in the imaginary bag.

        Here, most chips are blue (75 of 100) and fewer are red (25 of 100).
    ImageComponent crdm_instr2_img
      image = crdm/risk_blue_75.bmp
      pos = (0.6, 0)
      saveStartStop = False
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent crdm_instr2_lott0_txt
      letterHeight = 0.04
      pos = (0.6, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$0
      wrapWidth = 1.5
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    TextComponent crdm_instr2_lott20_txt
      letterHeight = 0.04
      pos = (0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$20
      wrapWidth = 1.5
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    TextComponent crdm_instr2_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_instr3
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    TextComponent crdm_instr3_lottname_txt
      letterHeight = 0.05
      pos = (-0.2, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = *Playing the Lottery*
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    TextComponent crdm_instr3_txt
      letterHeight = 0.03
      pos = (-0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1
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      text:
        Given information about the number of blue and red chips in the bag, you can decide whether you would prefer a certain monetary outcome or if you would rather play the lottery for a chance to win a different amount.

        In this example, you have a 75% chance of pulling a blue chip and winning \$20. Conversely, you have a 25% chance of pulling a red chip and receiving \$0.

        The value for each color will change from bag to bag. Read the \$ amounts above the red and below the blue to know the value of each chip color.
    ImageComponent crdm_instr3_img
      image = crdm/risk_blue_75.bmp
      pos = (0.6, 0)
      saveStartStop = False
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent crdm_instr3_lott0_txt
      letterHeight = 0.04
      pos = (0.6, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$0
      wrapWidth = 1.5
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    TextComponent crdm_instr3_lott20_txt
      letterHeight = 0.04
      pos = (0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$20
      wrapWidth = 1.5
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    TextComponent crdm_instr3_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr3_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_instr4
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    TextComponent crdm_instr4_lottname_txt
      letterHeight = 0.05
      pos = (-0.2, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = *Playing the Lottery*
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    TextComponent crdm_instr4_txt
      letterHeight = 0.03
      pos = (-0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        For some lotteries, information about the bag contents may be partially hidden.

        In this example, at least 25 chips are blue and 25 chips are red. However, the color of the remaining 50 chips is unknown. The remaining 50 could be all red, all blue, or a combination of the two.
    ImageComponent crdm_instr4_img
      image = crdm/ambig_50.bmp
      pos = (0.6, 0)
      saveStartStop = False
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent crdm_instr4_lott0_txt
      letterHeight = 0.04
      pos = (0.6, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$0
      wrapWidth = 1.5
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    TextComponent crdm_instr4_lott20_txt
      letterHeight = 0.04
      pos = (0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$20
      wrapWidth = 1.5
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    TextComponent crdm_instr4_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr4_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_instr5
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    TextComponent crdm_instr5_txt
      letterHeight = 0.03
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = The lottery bag will appear at the center of the screen. The certain dollar amount will be presented on either the right or left side of the bag. Here, a certain \$5 would be the left option, and lottery would be the right option:
      wrapWidth = 1.5
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    ImageComponent crdm_instr5_img
      image = crdm/risk_blue_75.bmp
      pos = (0, -0.05)
      saveStartStop = False
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent crdm_instr5_lott_top_txt
      letterHeight = 0.04
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$0
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    TextComponent crdm_instr5_lott_bot_txt
      letterHeight = 0.04
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$20
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    TextComponent crdm_instr5_sure_txt
      letterHeight = 0.06
      pos = (-0.5, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$5
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    TextComponent crdm_instr5_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr5_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_instr6
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    TextComponent crdm_instr6_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Risk & Ambiguity Task *
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    TextComponent crdm_instr6_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        When the green circle appears, use the number keys at the top of your keyboard to indicate your choice:

        Press 1 to select the left option
        Press 2 to select the right option
    ImageComponent crdm_instr6_img
      image = crdm/2key.png
      pos = (0, -0.1)
      saveStartStop = False
      size = (0.6, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent crdm_instr6_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr6_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_instr7
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    TextComponent crdm_instr7_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Risk & Ambiguity Task *
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    TextComponent crdm_instr7_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.35
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      text:
        After each choice, you will be asked to rate your choice confidence.
        1 indicates you couldn't decide which option you preferred and chose at random, while 4 indicates total certainty in your choice. Use the number keys at the top of your keyboard to indicate your confidence:

        Press 1 - Not at all confident
        Press 2 - Less confident
        Press 3 - Somewhat confident
        Press 4 - Very confident
    ImageComponent crdm_instr7_img
      image = crdm/4key.png
      pos = (0, -0.15)
      saveStartStop = False
      size = (0.6, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent crdm_instr7_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr7_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cpdm_namer1
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    CodeComponent cpdm_namer1_code
      Code Type = Auto->JS
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      Begin Routine:
        #provides specific loop names for each of three interations of CPDM
        #to provide flexibility of cpdm_pract_trial and cpdm_trial routines
        practice_loop_name = "cpdm_pract_trials1"
        loop_name = "cpdm_trials1"
  Routine crdm_namer1
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    CodeComponent crdm_namer_code
      Code Type = Auto->JS
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      Begin Routine:
        #provides specific loop names for each of two interations of CRDM
        #to provide flexibility of crdm_pract_trial and crdm_trial routines
        practice_loop_name = "crdm_pract_trials1"
        loop_name = "crdm_trials1"
  Routine cdd_namer1
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    CodeComponent cdd_namer1_code
      Code Type = Auto->JS
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      Begin Routine:
        #provides specific loop names for each of two interations of DD
        #to provide flexibility of cdd_pract_trial and cdd_trial routines
        practice_loop_name = "cdd_pract_trials1"
        loop_name = "cdd_trials1"
  Routine cdd_instr1
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    TextComponent cdd_instr1_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Delay Discounting Task *
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    TextComponent cdd_instr1_txt
      letterHeight = 0.03
      pos = (0, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        In this decision making task, you will be asked indicate your preference between:

        - An amount of money you could receive today
        OR
        - An amount of money you could receive in the future

        The value of each option and the length of delay will change across trials. One of your choices in this section may be randomly selected as your *bonus earnings trial* at the end of the experiment.

        Example:
        - If you chose \$25 dollars immediately, you would receive \$25 today.
        - If you chose \$50 in 15 days, you would receive \$50 in 15 days.
    TextComponent cdd_instr1_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent cdd_instr1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cdd_instr2
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    TextComponent cdd_instr2_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Delay Discounting Task *
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    TextComponent cdd_instr2_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        Please read each options carefully. The immediate and delayed choices may switch sides.

        Press 1 to select the left option
        Press 2 to select the right option








        When the green circle appears, you will have 2 seconds to choose.
    ImageComponent cdd_instr2_img
      image = cdd/2key.png
      pos = (0, -0.05)
      saveStartStop = False
      size = (0.6, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent cdd_instr2_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent cdd_instr2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cdd_instr3
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    TextComponent cdd_instr3_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Delay Discounting Task *
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    TextComponent cdd_instr3_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.35
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      text:
        After each choice, you will be asked to rate your choice confidence.
        1 indicates you couldn't decide which option you preferred and chose at random, while 4 indicates total certainty in your choice. Use the number keys at the top of your keyboard to indicate your confidence:

        Press 1 - Not at all confident
        Press 2 - Less confident
        Press 3 - Somewhat confident
        Press 4 - Very confident
    ImageComponent cdd_instr3_img
      image = cdd/4key.png
      pos = (0, -0.15)
      saveStartStop = False
      size = (0.6, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent cdd_instr3_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent cdd_instr3_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cpdm_namer2
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    CodeComponent cpdm_namer2_code
      Code Type = Auto->JS
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      Begin Routine:
        practice_loop_name = "cpdm_pract_trials2"
        loop_name = "cpdm_trials2"
  Routine crdm_namer2
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    CodeComponent crdm_namer_code2
      Code Type = Auto->JS
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      Begin Routine:
        #provides specific loop names for each of two interations of CRDM
        #to provide flexibility of crdm_pract_trial and crdm_trial routines
        practice_loop_name = "crdm_pract_trials2"
        loop_name = "crdm_trials2"
  Routine cdd_namer2
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    CodeComponent cdd_namer2_code
      Code Type = Auto->JS
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      Begin Routine:
        #provides specific loop names for each of two interations of DD
        #to provide flexibility of cdd_pract_trial and cdd_trial routines
        practice_loop_name = "cdd_pract_trials2"
        loop_name = "cdd_trials2"
  Routine cpdm_namer3
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    CodeComponent cpdm_namer3_code
      Code Type = Auto->JS
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      Begin Routine:
        practice_loop_name = "cpdm_pract_trials3"
        loop_name = "cpdm_trials3"
  Routine idm_rand_select
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    CodeComponent idm_rand_select_code
      Code Type = Auto->JS
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      Begin Routine:
        exps = ["cpdm", "crdm", "cdd"]
        rand_idx = random.randint(0,2)
        random_exp = exps[rand_idx]
        my_loop.addData("idm_bonus_exp", random_exp)
  Routine crdm_bonus
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    CodeComponent crdm_bonus_code
      Code Type = Auto->JS
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      Begin Routine:
        if random_exp == "crdm":
            continueRoutine = True
        else:
            continueRoutine = False

        exp = []
        choice = []
        money = []
        trial_img = []
        top = []
        bottom = []
        outcome = []
        winning_side = []
        domain = []
        sure_amt = 5
        earnings_text = ""
        choice_text = ""
        outcome_color = [0,0,0]
        chip_color = [0,0,0]
        chip_text = ""
        choice_outcome = ""
        money_outcome = ""

        #indexing examples
        #certain chosen - ("crdm", "sure", 5, crdm_img, crdm_lott_top, crdm_lott_bot, "-1", crdm_win_side, crdm_domain)
        #lotto chosen, win top - ("crdm", "lott", crdm_lott_top, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_win_side, crdm_domain)
        #lotto chosen, win bottom - ("crdm", "lott", crdm_lott_bot, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_win_side, crdm_domain)
        #lotto chosen, lose - ("crdm", "lott", 0, crdm_img, crdm_lott_top, crdm_lott_bot, lott_outcome, crdm_win_side, crdm_domain)
        idx = int(random.random() * len(crdm_trials))
        exp, choice, money, trial_img, top, bottom, outcome, winning_side, domain = crdm_trials[idx]
        if random_exp == "crdm":
            my_loop.addData("crdm_bonus_choice", choice)
            my_loop.addData("crdm_bonus_amt", money)

        red_win = False
        #red wins in non-ambiguous trial
        if "red" in trial_img:
            red_win = True
        #blue wins or ambiguous red trial
        else:
            #ambiguous trial
            if "ambig" in trial_img:
                #red wins
                if winning_side == "top":
                    red_win = True

        #text for bonus payment screen
        #Ss choice certain $5
        if choice == "sure":
            choice_text = "*CERTAIN*"
            outcome_color = [0.7098, 0.2941, -0.7490]
            chip_color = [0,0,0]
            chip_text = ""
            choice_outcome = "$" + str(money)
            money_outcome = ""
        else: #Ss chose lottery
            choice_text = "*PLAY THE LOTTERY*"
            #Ss won
            if outcome == 1:
                if red_win == True:
                    outcome_color = [0.9608, 0.0039, -0.1059]
                    chip_color = [0.9608, 0.0039, -0.1059]
                    choice_outcome = "A red chip"
                    chip_text = "was drawn and you will receive"
                    money_outcome = "$"+str(money)
                else:
                    outcome_color = [-0.2157, 0.1686, 0.8588]
                    chip_color = [-0.2157, 0.1686, 0.8588]
                    choice_outcome = "A blue chip"
                    chip_text = "was drawn and you will receive"
                    money_outcome = "$"+str(money)
            #Ss lost
            if outcome == 0:
                if red_win == True:
                    outcome_color = [-0.2157, 0.1686, 0.8588]
                    chip_color = [-0.2157, 0.1686, 0.8588]
                    choice_outcome = "A blue chip"
                    chip_text = "was drawn and you will receive"
                    money_outcome = "$"+str(money)
                else:
                    outcome_color = [0.9608, 0.0039, -0.1059]
                    chip_color = [0.9608, 0.0039, -0.1059]
                    choice_outcome = "A red chip"
                    chip_text = "was drawn and you will receive"
                    money_outcome = "$"+str(money)
    TextComponent crdm_bonus_thanks_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.35
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      text:
        Your randomly selected *bonus earnings trial* is from the
        Risk & Ambiguity Task!
    TextComponent crdm_bonus_lott_top
      letterHeight = 0.04
      pos = (0.6, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $str("$"+str(top))
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    ImageComponent crdm_bonus_img
      image [set every repeat] = $"crdm/" + trial_img
      pos = (0.6, -0.1)
      saveStartStop = False
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent crdm_bonus_lott_bot
      letterHeight = 0.04
      pos = (0.6, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $str("$"+str(bottom))
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    TextComponent crdm_bonus_sure_amt_txt
      letterHeight = 0.04
      pos = (0.4, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $str("$"+str(sure_amt))
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    TextComponent crdm_bonus_prompt_txt
      letterHeight = 0.04
      pos = (-0.2, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = In this trial, you chose:
      wrapWidth = 1
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    TextComponent crdm_bonus_choice_text_txt
      letterHeight = 0.05
      pos = (-0.2, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $choice_text
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    TextComponent crdm_bonus_choice_outcome_txt
      color [set every repeat] = $outcome_color
      letterHeight = 0.06
      pos = (-0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $choice_outcome
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    TextComponent crdm_bonus_drawn_txt
      letterHeight = 0.04
      pos = (-0.2, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $chip_text
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    PolygonComponent crdm_bonus_chip_poly
      fillColor [set every repeat] = $chip_color
      lineColor [set every repeat] = $chip_color
      saveStartStop = False
      shape = circle
      size = (0.075, 0.075)
      startVal [time (s)] = 0.0
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    TextComponent crdm_bonus_winnings_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.08
      pos = (-0.2, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $money_outcome
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    TextComponent crdm_bonus_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to receive your *COMPLETION CODE*
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    KeyboardComponent crdm_bonus_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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
  Routine idm_instr1
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    CodeComponent idm_instr1_JS
      Code Type = JS
      Begin JS Experiment:
        //function for random.random used in python
        random = {
        random: function(){return Math.random()},
        randint: function(start, end){return Math.round(Math.random() * (end - start) + start)},
        choices: function(items, weights){
            var i;
            for (i = 0; i < weights.length; i++)
                weights[i] += weights[i - 1] || 0;
            var random = Math.random() * weights[weights.length - 1];
            for (i = 0; i < weights.length; i++)
                if (weights[i] > random)
                    break;
            return items[i] }
        }
    CodeComponent idm_instr1_code
      Code Type = Both
      Before Experiment:
        ###code written by Mandy Renfro (2022)###

        #allows all possible order of tasks (3)
        import random
        #QC and Bot check variable
        exp_proceed = True
        crdm_conf_resps = []
        cdd_conf_resps = []

        #set empty array for Ss trials for possible payout across all tasks
        cpdm_trials = []
        crdm_trials = []
        cdd_trials = []

        #CPDM
        loop1 = False
        #CRDM
        loop2 = False
        #CDD
        loop3 = False
        #CPDM
        loop4 = False
        #CRDM
        loop5 = False
        #CDD
        loop6 = False
        #CPDM
        loop7 = False

        #random int determines order, loop# is used in should_run# nReps
        #when converting to JS, use parseInt()
        #order = int(random.random() * 6)
        order = 1 #beta testing
        #order 1
        if order == 0:
            loop1 = True
            loop2 = True
            loop3 = True
        #order 2
        elif order == 1:
            loop1 = True
            loop3 = True
            loop5 = True
        #order 3
        elif order == 2:
            loop3 = True
            loop4 = True
            loop5 = True
        #order 4
        elif order == 3:
            loop2 = True
            loop3 = True
            loop4 = True
        #order 5
        elif order == 4:
            loop3 = True
            loop5 = True
            loop7 = True
        #order 6
        elif order == 5:
            loop2 = True
            loop4 = True
            loop6 = True
      Before JS Experiment:
        var cdd_conf_resps, cdd_trials, cpdm_trials, crdm_conf_resps, crdm_trials, exp_proceed, loop1, loop2, loop3, loop4, loop5, loop6, loop7, order;
        exp_proceed = true;
        crdm_conf_resps = [];
        cdd_conf_resps = [];
        cpdm_trials = [];
        crdm_trials = [];
        cdd_trials = [];
        loop1 = false;
        loop2 = false;
        loop3 = false;
        loop4 = false;
        loop5 = false;
        loop6 = false;
        loop7 = false;
        //order = 0;
        order = Number.parseInt((Math.random() * 6));
        if ((order === 0)) {
            loop1 = true;
            loop2 = true;
            loop3 = true;
        } else {
            if ((order === 1)) {
                loop1 = true;
                loop3 = true;
                loop5 = true;
            } else {
                if ((order === 2)) {
                    loop3 = true;
                    loop4 = true;
                    loop5 = true;
                } else {
                    if ((order === 3)) {
                        loop2 = true;
                        loop3 = true;
                        loop4 = true;
                    } else {
                        if ((order === 4)) {
                            loop3 = true;
                            loop5 = true;
                            loop7 = true;
                        } else {
                            if ((order === 5)) {
                                loop2 = true;
                                loop4 = true;
                                loop6 = true;
                            }
                        }
                    }
                }
            }
        }
    TextComponent idm_instr1_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Introspection and Decision Making Study *
      wrapWidth = 1.5
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    TextComponent idm_instr1_txt
      letterHeight = 0.03
      pos = (0, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        The computer-based decision making tasks will now begin. These tasks will be presented in random order. Opportunities will be provided for you to take breaks. Importantly, the IDM study must be completed in a single session. Do not close your browser until after you have received your *IDM Task Completion Code*

        At the end of the experiment, a single trial will be randomly-selected from one of the computer-based tasks. This trial is your "bonus earnings trial" and will determine the amount of your variable bonus. How much money you receive will depend on the choice you made on that specific trial, as per task instructions.

        In other words, each decision you make has a chance of actually happening! So make sure every choice *truly* reflects your preference.
    TextComponent idm_instr1_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent idm_instr1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_init_fix
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    PolygonComponent crdm_init_fix_poly
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine cdd_init_fix
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    PolygonComponent cdd_init_fix_polygon
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine idm_intro
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    TextComponent idm_intro_welcome_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Introspection and Decision Making Study *
      wrapWidth = 1.5
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    TextComponent idm_intro_instr_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.35
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      text:
        Thank you for your decision to participate in the IDM study.

        You will be asked to complete two surveys and three decision making tasks. The first survey includes questions about demographic information, mental health, and substance use. The second survey assesses your ability to recognize internal physiological states (e.g., hunger, thirst).

        In total, your participation will take approximately 1 hour and 50 minutes:

        Demographics Survey (~5 minutes)
        Interoceptive Accuracy Scale (~5 minutes)
        Visual Decision Making Task (~70 minutes)
        Risk & Ambiguity Task (~15 minutes)
        Delay Discounting Task (~15 minutes)
    TextComponent idm_intro_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent idm_intro_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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
  Routine idm_surv1
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    CodeComponent idm_surv1_code
      Code Type = Auto->JS
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      Begin Routine:
        survbox1_color = [0,0,0]
        survbox2_color = [0,0,0]
        survbox3_color = [0,0,0]
        survbox4_color = [0,0,0]
        survbox5_color = [0,0,0]
        survbox6_color = [0,0,0]
        font_color1 = [0,0,0]
        font_color2 = [0,0,0]
        font_color3 = [0,0,0]
        font_color4 = [0,0,0]
        font_color5 = [0,0,0]
        font_color6 = [0,0,0]
        resp1_txt = ""
        resp2_txt = ""
        resp3_txt = ""
        resp4_txt = ""
        resp5_txt = ""
        resp6_txt = ""

        if resps == 2:
            surv_keylist = ["1", "2"]
            survbox1_color = "white"
            survbox2_color = "white"
            font_color1 = "white"
            font_color2 = "white"
            resp1_txt = resp1
            resp2_txt = resp2
        elif resps == 3:
            surv_keylist = ["1", "2", "3"]
            survbox1_color = "white"
            survbox2_color = "white"
            survbox3_color = "white"
            font_color1 = "white"
            font_color2 = "white"
            font_color3 = "white"
            resp1_txt = resp1
            resp2_txt = resp2
            resp3_txt = resp3
        elif resps == 4:
            surv_keylist = ["1", "2", "3", "4"]
            survbox1_color = "white"
            survbox2_color = "white"
            survbox3_color = "white"
            survbox4_color = "white"
            font_color1 = "white"
            font_color2 = "white"
            font_color3 = "white"
            font_color4 = "white"
            resp1_txt = resp1
            resp2_txt = resp2
            resp3_txt = resp3
            resp4_txt = resp4
        elif resps == 5:
            surv_keylist = ["1", "2", "3", "4", "5"]
            survbox1_color = "white"
            survbox2_color = "white"
            survbox3_color = "white"
            survbox4_color = "white"
            survbox5_color = "white"
            font_color1 = "white"
            font_color2 = "white"
            font_color3 = "white"
            font_color4 = "white"
            font_color5 = "white"
            resp1_txt = resp1
            resp2_txt = resp2
            resp3_txt = resp3
            resp4_txt = resp4
            resp5_txt = resp5
        elif resps == 6:
            surv_keylist = ["1", "2", "3", "4", "5", "6"]
            survbox1_color = "white"
            survbox2_color = "white"
            survbox3_color = "white"
            survbox4_color = "white"
            survbox5_color = "white"
            survbox6_color = "white"
            font_color1 = "white"
            font_color2 = "white"
            font_color3 = "white"
            font_color4 = "white"
            font_color5 = "white"
            font_color6 = "white"
            resp1_txt = resp1
            resp2_txt = resp2
            resp3_txt = resp3
            resp4_txt = resp4
            resp5_txt = resp5
            resp6_txt = resp6
      Each Frame:
        key = idm_surv1_resp.keys

        if resps == 2:
            if key == "1" or key == "2":
                continueRoutine = False
        elif resps == 3:
            if key == "1" or key == "2" or key == "3":
                continueRoutine = False
        elif resps == 4:
            if key == "1" or key == "2" or key == "3" or key == "4":
                continueRoutine = False
        elif resps == 5:
            if key == "1" or key == "2" or key == "3" or key == "4" or key == "5":
                continueRoutine = False
        elif resps == 6:
            if key == "1" or key == "2" or key == "3" or key == "4" or key == "5" or key == "6":
                continueRoutine = False
      End Routine:
        surv_key = idm_surv1_resp.keys

        if surv_key == "1":
            survey1.addData("surv1_resp", resp1)
        elif surv_key == "2":
            survey1.addData("surv1_resp", resp2)
        elif surv_key == "3":
            survey1.addData("surv1_resp", resp3)
        elif surv_key == "4":
            survey1.addData("surv1_resp", resp4)
        elif surv_key == "5":
            survey1.addData("surv1_resp", resp5)
        elif surv_key == "6":
            survey1.addData("surv1_resp", resp6)
    TextComponent idm_surv1_question_txt
      letterHeight = 0.04
      pos = (-0.4, 0.0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $question
      wrapWidth = 0.5
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    PolygonComponent idm_surv1_1
      fillColor = [0,0,0]
      lineColor [set every repeat] = $survbox1_color
      lineWidth = 10
      pos = (0.3, 0.35)
      saveStartStop = False
      shape = rectangle
      size = (0.6, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent idm_surv1_1_txt
      letterHeight = 0.03
      pos = (0.3, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $resp1_txt
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    PolygonComponent idm_surv1_2
      fillColor = [0,0,0]
      lineColor [set every repeat] = $survbox2_color
      lineWidth = 10
      pos = (0.3, 0.2)
      saveStartStop = False
      shape = rectangle
      size = (0.6, 0.10)
      startVal [time (s)] = 0.0
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    TextComponent idm_surv1_2_txt
      letterHeight = 0.03
      pos = (0.3, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $resp2_txt
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    PolygonComponent idm_surv1_3
      fillColor = [0,0,0]
      lineColor [set every repeat] = $survbox3_color
      lineWidth = 10
      pos = (0.3, 0.05)
      saveStartStop = False
      shape = rectangle
      size = (0.6, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent idm_surv1_3_txt
      letterHeight = 0.03
      pos = (0.3, 0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $resp3_txt
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    PolygonComponent idm_surv1_4
      fillColor = [0,0,0]
      lineColor [set every repeat] = $survbox4_color
      lineWidth = 10
      pos = (0.3, -0.1)
      saveStartStop = False
      shape = rectangle
      size = (0.6, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent idm_surv1_4_txt
      letterHeight = 0.03
      pos = (0.3, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $resp4_txt
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    PolygonComponent idm_surv1_5
      fillColor = [0,0,0]
      lineColor [set every repeat] = $survbox5_color
      lineWidth = 10
      pos = (0.3, -0.25)
      saveStartStop = False
      shape = rectangle
      size = (0.6, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent idm_surv1_5_txt
      letterHeight = 0.03
      pos = (0.3, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $resp5_txt
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    PolygonComponent idm_surv1_6
      fillColor = [0,0,0]
      lineColor [set every repeat] = $survbox6_color
      lineWidth = 10
      pos = (0.3, -0.4)
      saveStartStop = False
      shape = rectangle
      size = (0.6, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent idm_surv1_6_txt
      letterHeight = 0.03
      pos = (0.3, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $resp6_txt
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    TextComponent idm_surv1_key1
      color [set every repeat] = $font_color1
      letterHeight = 0.04
      pos = (0.05, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent idm_surv1_key2
      color [set every repeat] = $font_color2
      letterHeight = 0.04
      pos = (0.05, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent idm_surv1_key3
      color [set every repeat] = $font_color3
      letterHeight = 0.04
      pos = (0.05, 0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 3
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    TextComponent idm_surv1_key4
      color [set every repeat] = $font_color4
      letterHeight = 0.04
      pos = (0.05, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 4
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    TextComponent idm_surv1_key5
      color [set every repeat] = $font_color5
      letterHeight = 0.04
      pos = (0.05, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 5
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    TextComponent idm_surv1_key6
      color [set every repeat] = $font_color6
      letterHeight = 0.04
      pos = (0.05, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 6
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    KeyboardComponent idm_surv1_resp
      allowedKeys = "1", "2", "3", "4", "5", "6"
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine idm_surv2
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    CodeComponent idm_surv2_code_2
      Code Type = Auto->JS
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      End Routine:
        surv_key = idm_surv2_resp.keys

        if surv_key == "1":
            survey2.addData("surv2_resp", resp1)
        elif surv_key == "2":
            survey2.addData("surv2_resp", resp2)
        elif surv_key == "3":
            survey2.addData("surv2_resp", resp3)
        elif surv_key == "4":
            survey2.addData("surv2_resp", resp4)
        elif surv_key == "5":
            survey2.addData("surv2_resp", resp5)
    TextComponent idm_surv2_stim_txt
      letterHeight = 0.05
      pos = (-0.4, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1
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      text:
        I can always accurately
        perceive when
    TextComponent idm_surv2_question_txt
      letterHeight = 0.05
      pos = (-0.4, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $question
      wrapWidth = 0.7
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    PolygonComponent idm_surv2_1
      fillColor = [0,0,0]
      lineWidth = 10
      pos = (0.3, 0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.6, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent idm_surv2_1_txt
      letterHeight = 0.03
      pos = (0.3, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Strongly Agree
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    PolygonComponent idm_surv2_2
      fillColor = [0,0,0]
      lineWidth = 10
      pos = (0.3, 0.15)
      saveStartStop = False
      shape = rectangle
      size = (0.6, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent idm_surv2_2_txt
      letterHeight = 0.03
      pos = (0.3, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Agree
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    PolygonComponent idm_surv2_3
      fillColor = [0,0,0]
      lineWidth = 10
      pos = (0.3, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.6, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent idm_surv2_3_txt
      letterHeight = 0.03
      pos = (0.3, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Neither Agree or Disagree
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    PolygonComponent idm_surv2_4
      fillColor = [0,0,0]
      lineWidth = 10
      pos = (0.3, -0.15)
      saveStartStop = False
      shape = rectangle
      size = (0.6, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent idm_surv2_4_txt
      letterHeight = 0.03
      pos = (0.3, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Disagree
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    PolygonComponent idm_surv2_5
      fillColor = [0,0,0]
      lineWidth = 10
      pos = (0.3, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.6, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent idm_surv2_5_txt
      letterHeight = 0.03
      pos = (0.3, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Strongly Disagree
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    TextComponent idm_surv2_key1
      letterHeight = 0.04
      pos = (0.05, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent idm_surv2_key2
      letterHeight = 0.04
      pos = (0.05, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent idm_surv2_key3
      letterHeight = 0.04
      pos = (0.05, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 3
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    TextComponent idm_surv2_key4
      letterHeight = 0.04
      pos = (0.05, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 4
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    TextComponent idm_surv2_key5
      letterHeight = 0.04
      pos = (0.05, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 5
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    KeyboardComponent idm_surv2_resp
      allowedKeys = "1", "2", "3", "4", "5"
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine idm_surv2_intro
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    TextComponent idm_surv2_intro_title_txt
      color = 0.1216, 0.4745, 0.1216
      letterHeight = 0.06
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Interoceptive Accuracy Scale *
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    TextComponent idm_surv2_intro_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        The following survey consists of 21 five-point scale questions about your ability to perceive internal physiological states and should take less than 5 minutes to complete.

        Please use the number keys at the top of your keyboard to indicate your response.

        The number associated with each response is displayed to the left.
    TextComponent idm_surv2_intro_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent idm_surv2_intro_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine idm_surv1_intro
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    TextComponent idm_surv1_intro_title_txt
      color = 0.1216, 0.4745, 0.1216
      letterHeight = 0.06
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Demographics Survey *
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    TextComponent idm_surv1_intro_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        The following survey contains 11 multiple choice questions and should take less than 5 minutes to complete.

        Please use the number keys at the top of your keyboard to indicate your response.

        The number associated with each response is displayed to the left.
    TextComponent idm_surv1_intro_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent idm_surv1_intro_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine idm_instr2
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    TextComponent idm_instr2_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Introspection and Decision Making Study *
      wrapWidth = 1.5
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    TextComponent idm_instr2_cursor_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        During this experiment, all responses will be made using your keyboard.

        Before you begin, please take this moment to move your mouse cursor to the edge of the screen.
    TextComponent idm_instr2_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent idm_instr2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine idm_term_check
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    CodeComponent idm_term_check_code
      Code Type = Both
      Begin JS Routine:
        if ((exp_proceed === false)) {
            psychoJS.quit();
        }
      Begin Routine:
        if exp_proceed == False:
            core.quit()
  Routine cpdm_instr3
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    TextComponent cpdm_instr3_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Visual Decision Making Task *
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    TextComponent cpdm_instr3_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        There are four (4) blocks of 200 trials.

        Your choice for each trial will determine how much money you could earn if that trial is randomly selected as your *bonus earnings* trial. The monetary values for each of the four responses may change from block to block. These values will be provided before each block, so pay careful attention.
    TextComponent cpdm_instr3_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent cpdm_instr3_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cpdm_instr2
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    TextComponent cpdm_instr2_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Visual Decision Making Task *
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    TextComponent cpdm_instr2_instr_txt
      letterHeight = 0.03
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = You can tell "tilt" by which direction the top of the pattern is pointing:
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    ImageComponent cpdm_instr2_left_arrow
      image = cpdm/arrow.png
      pos = (-0.4, 0.05)
      saveStartStop = False
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
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    GratingComponent cpdm_instr2_left_gabor
      contrast = 0.2
      mask = gauss
      ori = -5
      pos = (-0.4, -0.1)
      saveStartStop = False
      sf = 6
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      tex = sin
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    TextComponent cpdm_instr2_left_txt
      letterHeight = 0.03
      pos = (-0.4, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = This pattern tilts LEFT
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    ImageComponent cpdm_instr2_right_arrow
      flipHoriz = True
      image = cpdm/arrow.png
      pos = (0.4, 0.05)
      saveStartStop = False
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
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    GratingComponent cpdm_instr2_right_gabor
      contrast = 0.2
      mask = gauss
      ori = 5
      pos = (0.4, -0.1)
      saveStartStop = False
      sf = 6
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      tex = sin
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    TextComponent cpdm_instr2_right_txt
      letterHeight = 0.03
      pos = (0.4, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = This pattern tilts RIGHT
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    TextComponent cpdm_instr2_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent cpdm_instr2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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
  Routine idm_consent1
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    TextComponent idm_consent1_welcome_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Welcome to the Introspection and Decision Making Study 
      wrapWidth = 1.5
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    TextComponent idm_consent1_info_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        The Introspection and Decision Making research study is intended for the scientific purpose of furthering our understanding of how people make decisions and their confidence regarding those choices.

        The following consent information describes the study and is intended to help inform your choice to participate.
    TextComponent idm_consent1_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent idm_consent1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine idm_consent2
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    TextComponent idm_consent2_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Information on this Research
      wrapWidth = 1.5
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    TextComponent idm_consent2_info_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        The Introspection and Decision Making (IDM) study is conducted by the Computational Decision Neuroscience laboratory (CDN; Principal Investigator Dr. Silvia Lopez-Guzman) at the National Institute of Mental Health.

        Participation in the IDM study is entirely voluntary. You are not required to participate and refusal to do so will in no way affect access to any services or benefits.

        If you choose to participate, you may quit at any time without penalty.
    TextComponent idm_consent2_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent idm_consent2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine idm_consent3
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    TextComponent idm_consent3_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Why are we conducting this study?
      wrapWidth = 1.5
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    TextComponent idm_consent3_info_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        Decision making is a complex process in which individuals evaluate and select between different options and/or courses of action. Understanding these principles and how our brain supports decision making is important not only for learning about healthy cognition and behavior, but also informs treatment to help those with certain mental health conditions.

        Here, we are investigating the relationship between decision making and value-based judgments. Additionally, we are interested in how people reflect upon, and the degree to which they are confident in, these choices.
    TextComponent idm_consent3_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent idm_consent3_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine idm_consent4
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    TextComponent idm_consent4_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = What will I be asked to do and how long will it take?
      wrapWidth = 1.5
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    TextComponent idm_consent4_info_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        In total, your participation is expected to take approximately 1 hours and 50 minutes: 10 minutes to complete 2 surveys, and 100 minutes to complete 3 computer-based tasks.

        The first survey includes questions about demographic information, mental health history, and past/present substance use. The second survey assesses your ability to detect and recognize certain internal body states (e.g., hunger, thirst).
    TextComponent idm_consent4_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent idm_consent4_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine idm_consent5
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    TextComponent idm_consent5_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = What will I be asked to do and how long will it take?
      wrapWidth = 1.5
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    TextComponent idm_consent5_info_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        The 3 computer-based tasks include:

        1. Visual Decision Making Task (~70 minutes). Make judgments about the tilt of an oriented pattern and your confidence about your decision.

        2. Risk & Ambiguity Task (~15 minutes). Choose between (1) receiving a certain smaller amount of money, or (2) playing a lottery for the chance to win a larger amount. Then rate how confidently you feel your choice truly reflects your preference.

        3. Delay Discounting Task (~15 minutes). Choose between (1) a smaller amount of money received today, or (2) a larger amount of money received in the future. Then rate how confidently you feel your choice truly reflects your preference.
    TextComponent idm_consent5_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent idm_consent5_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine idm_consent6
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    TextComponent idm_consent6_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = What are the benefits and risks of participating in the study?
      wrapWidth = 1.5
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    TextComponent idm_consent6_info_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.35
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      text:
        There are no direct benefits from participating in this research study. In addition, this study involves minimal risk to participants. However, the potential loss or compromise of confidentiality is a risk for all research in which data is collected from human participants. Loss or compromise of confidentiality involves the unauthorized access and/or use of participant data.

        To minimize risk of data loss or compromise of confidentiality, Amazon Mechanical Turk (MTurk) will not collect any experimental data and CDN researchers will not have access to any personal identifiable information MTurk collects for the creation of your account. All tasks and questionnaires will be conducted on Pavlovia, a secure website separate from MTurk. Data you provide on Pavlovia will only be linked to your worker ID temporarily to ensure credit/compensation. Once data collection is complete, information linking your MTurk worker ID to data collected through Pavlovia will be destroyed.
    TextComponent idm_consent6_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent idm_consent6_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine idm_consent7
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    TextComponent idm_consent7_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Will I receive compensation for participating in this research study?
      wrapWidth = 1.5
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    TextComponent idm_consent7_info_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.35
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      text:
        Your participation and earnest performance completing the two surveys and three computer-based tasks will entitle you to a fixed, standard compensation.

        In addition, you may also receive a variable bonus. A single trial will be randomly-selected from one of three computer-based tasks. You will receive the monetary value associated with your specific choice on that trial, as per task instructions. The variable bonus encourages you to make each choice based on your true preference, as any trial has the chance to be made real with actual money.

        **IMPORTANT**

        1. Missing too many trials or responding in a manner that indicates you are not engaged with the task or do not understand instructions will result in the experiment terminating prematurely. You will not be compensated if the experiment is terminated for these reasons.

        2. You can only be paid for completing this study once. If you complete the IDM study a second time, you will not receive additional compensation.
    TextComponent idm_consent7_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent idm_consent7_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine idm_consent8
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    TextComponent idm_consent8_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Who can I talk to if I have questions?
      wrapWidth = 1.5
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    TextComponent idm_consent8_info_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.35
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      text:
        If you have any questions or concerns regarding participation, contact the principal investigator:

        Dr. Silvia Lopez-Guzman
        NIMHCDN@mail.nih.gov
    TextComponent idm_consent8_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent idm_consent8_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine idm_consent9
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    TextComponent idm_consent9_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Consent to Participate
      wrapWidth = 1.5
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    TextComponent idm_consent9_info_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        If, after reading and understanding this consent information, you...



        *AGREE TO PARTICIPATE*
        Press the SPACE button on your keyboard to continue the IDM study.
        By doing so, you indicate you (1) are at least 18 years old, (2) have read and understand the provided consent information, and (3) agree to participate in the IDM study.



        *DO NOT AGREE TO PARTICIPATE*
        Press the "ESC" button on your keyboard twice to exit the IDM study.
    KeyboardComponent idm_consent9_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cpdm_instr4
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    TextComponent cpdm_instr4_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Visual Decision Making Task *
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    TextComponent cpdm_instr4_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        As you provide your responses, please note some pattern tilts will be harder to determine than others. On these trials, you may be less confident than on trials where the tilt is more obvious.

        Please remember to distiguish between trials in which you feel high and low confidence regarding the tilt of the pattern.
    TextComponent cpdm_instr4_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent cpdm_instr4_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine idm_warn2
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    TextComponent idm_warn2_title_txt
      color = 0.8824, 0.0039, 0.0039
      letterHeight = 0.06
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = *Reminder*
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    TextComponent idm_warn2_warning_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        Please remember if you respond to fewer than 95% of trials, or provide responses which indicate you are not following task instructions, the EXPERIMENT WILL END and you will not receive any form of payment or bonus.

        If you do not wish to continue, you can end the task at any time by pressing the ESC button twice.

        Please remain engaged throughout the experiment and provide earnest, sincere responses for each trial. Remember, your choices could help you walk away with an additional bonus ranging from \$2 to \$65, depending on the seleced *bonus earnings trial*!
    TextComponent idm_warn2_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent idm_warn2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine idm_warn1
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    TextComponent idm_warn1_title_txt
      color = 0.8824, 0.0039, 0.0039
      letterHeight = 0.06
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = *Warning*
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    TextComponent idm_warn1_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        Please note if you do not respond to at least 95% of task trials, or provide responses which indicate you are not following task instructions, the EXPERIMENT WILL END and you will not receive any form of payment or bonus.

        If you do not wish to continue, you may quit at any time by pressing the ESC button twice.

        Your ability to follow task instructions will be assessed at each stage of the experiment. Please pay attention to all instructions. Read each screen carefully to ensure you understand what to do. Practice trials are provided to teach you how each task is performed.

        Please do your best and remain engaged throughout the entire experiment.
    TextComponent idm_warn1_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent idm_warn1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cpdm_warn
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    TextComponent cpdm_warn1_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Visual Decision Making Task *
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    TextComponent cpdm_warn1_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        IMPORTANT: The experiment will end if you (1) miss more than 5% of trials per block, or (2) provide responses which indicate you did not understand, or are not following, task instructions. If this happens, you will not be eligible to receive payment or a bonus.

        Please remain engaged throughout the experiment and provide earnest, sincere responses for each trial. Thank you for your participation!
    TextComponent cpdm_warn1_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent cpdm_warn1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cdd_warn
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    TextComponent cdd_warn1_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Delay Discounting Task *
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    TextComponent cdd_warn1_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        IMPORTANT: You must answer both the choice and confidence prompts to complete each trial. The experiment will end if you (1) miss more than 5% of trials, or (2) provide responses which indicate you did not understand, or are not following, task instructions. If this happens, you will not be eligible to receive payment or a bonus.

        Please remain engaged throughout the experiment and provide earnest, sincere responses for each trial. Thank you for your participation!
    TextComponent cdd_warn1_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent cdd_warn1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_warn
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    TextComponent crdm_warn1_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Risk & Ambiguity Task *
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    TextComponent crdm_warn1_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        IMPORTANT: You must answer both the choice and confidence prompts to complete each trial. The experiment will end if you (1) miss more than 5% of trials, or (2) provide responses which indicate you did not understand, or are not following, task instructions. If this happens, you will not be eligible to receive payment or a bonus.

        Please remain engaged throughout the experiment and provide earnest, sincere responses for each trial. Thank you for your participation!
    TextComponent crdm_warn1_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_warn1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine idm_consent1
  Routine idm_consent2
  Routine idm_consent3
  Routine idm_consent4
  Routine idm_consent5
  Routine idm_consent6
  Routine idm_consent7
  Routine idm_consent8
  Routine idm_consent9
  Routine idm_intro
  Routine idm_warn1
  Routine idm_surv1_intro
  LoopInitiator survey1 loopType="TrialHandler"
    conditionsFile = idm_survey1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'idm_task': 'survey1', 'item': 1, 'question': 'Please select the range which contains your current age:', 'resps': 6, 'resp1': '18-23', 'resp2': '24-29', 'resp3': '30-35', 'resp4': '36-41', 'resp5': '42-47', 'resp6': '48-55'},
      {'idm_task': 'survey1', 'item': 2, 'question': 'Which of the following best describes your gender?', 'resps': 5, 'resp1': 'Male', 'resp2': 'Female', 'resp3': 'Nonbinary', 'resp4': 'Other', 'resp5': 'Rather not say', 'resp6': None},
      {'idm_task': 'survey1', 'item': 3, 'question': 'Which of the following best describes your race?', 'resps': 6, 'resp1': 'American Indian/Alaskian Native', 'resp2': 'Asian', 'resp3': 'Native Hawaiian/Pacific Islander', 'resp4': 'Black/African American', 'resp5': 'White', 'resp6': 'Multiracial'},
      {'idm_task': 'survey1', 'item': 4, 'question': 'Are you Hispanic or Latino?', 'resps': 2, 'resp1': 'Yes', 'resp2': 'No', 'resp3': None, 'resp4': None, 'resp5': None, 'resp6': None},
      {'idm_task': 'survey1', 'item': 5, 'question': 'Please select the range which contains your average annual gross income (US dollars):', 'resps': 6, 'resp1': '0-9,999', 'resp2': '10,000-14,999', 'resp3': '15,000-24,999', 'resp4': '25,000-49,999', 'resp5': '50,000-99,999', 'resp6': '100,00 or more'}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
    Routine idm_surv1
  LoopTerminator survey1
  Routine idm_surv2_intro
  LoopInitiator survey2 loopType="TrialHandler"
    conditionsFile = idm_survey2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'idm_task': 'survey1', 'item': 1, 'question': 'my heart is beating fast.', 'resps': 5, 'resp1': 'Strongly Agree', 'resp2': 'Agree', 'resp3': 'Neither', 'resp4': 'Disagree', 'resp5': 'Strongly Disagree'},
      {'idm_task': 'survey1', 'item': 2, 'question': 'I am hungry.', 'resps': 5, 'resp1': 'Strongly Agree', 'resp2': 'Agree', 'resp3': 'Neither', 'resp4': 'Disagree', 'resp5': 'Strongly Disagree'},
      {'idm_task': 'survey1', 'item': 3, 'question': 'I am breathing fast.', 'resps': 5, 'resp1': 'Strongly Agree', 'resp2': 'Agree', 'resp3': 'Neither', 'resp4': 'Disagree', 'resp5': 'Strongly Disagree'},
      {'idm_task': 'survey1', 'item': 4, 'question': ' I am thirsty.', 'resps': 5, 'resp1': 'Strongly Agree', 'resp2': 'Agree', 'resp3': 'Neither', 'resp4': 'Disagree', 'resp5': 'Strongly Disagree'},
      {'idm_task': 'survey1', 'item': 5, 'question': 'I need to urinate.', 'resps': 5, 'resp1': 'Strongly Agree', 'resp2': 'Agree', 'resp3': 'Neither', 'resp4': 'Disagree', 'resp5': 'Strongly Disagree'},
      {'idm_task': 'survey1', 'item': 6, 'question': 'I need to defecate.', 'resps': 5, 'resp1': 'Strongly Agree', 'resp2': 'Agree', 'resp3': 'Neither', 'resp4': 'Disagree', 'resp5': 'Strongly Disagree'},
      {'idm_task': 'survey1', 'item': 7, 'question': 'I encounter different tastes.', 'resps': 5, 'resp1': 'Strongly Agree', 'resp2': 'Agree', 'resp3': 'Neither', 'resp4': 'Disagree', 'resp5': 'Strongly Disagree'}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
    Routine idm_surv2
  LoopTerminator survey2
  Routine idm_instr1
  Routine idm_instr2
  Routine idm_warn2
  LoopInitiator should_run1 loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = loop1
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    Routine cpdm_namer1
    Routine cpdm_instr1
    Routine cpdm_instr2
    Routine cpdm_instr3
    Routine cpdm_instr4
    Routine cpdm_warn
    Routine cpdm_pract_instr
    Routine cpdm_init_fix
    LoopInitiator cpdm_pract_trials1 loopType="TrialHandler"
      conditionsFile = cpdm/cpdm_practice.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'idm_task': 'cpdm', 'item': 1, 'cpdm_gabor_orient': 2.5, 'cpdm_gabor_contrast': 0.025},
        {'idm_task': 'cpdm', 'item': 2, 'cpdm_gabor_orient': 2, 'cpdm_gabor_contrast': 0.05},
        {'idm_task': 'cpdm', 'item': 3, 'cpdm_gabor_orient': 0, 'cpdm_gabor_contrast': 0.2},
        {'idm_task': 'cpdm', 'item': 4, 'cpdm_gabor_orient': -2, 'cpdm_gabor_contrast': 0.25},
        {'idm_task': 'cpdm', 'item': 5, 'cpdm_gabor_orient': -2.5, 'cpdm_gabor_contrast': 0.1}]
      Routine cpdm_pract_trial
      Routine cpdm_pract_iti1
    LoopTerminator cpdm_pract_trials1
    Routine cpdm_trial_instr
    LoopInitiator condition_runs1 loopType="TrialHandler"
      conditionsFile = cpdm/cpdm_run_type.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'cpdm_run_dimension': 'high_vol_low_risk'},
        {'cpdm_run_dimension': 'high_vol_high_risk'},
        {'cpdm_run_dimension': 'low_vol_low_risk'},
        {'cpdm_run_dimension': 'low_vol_high_risk'}]
      Routine cpdm_run_setter
      Routine cpdm_loop_instr
      Routine cpdm_init_fix
      LoopInitiator cpdm_trials1 loopType="TrialHandler"
        conditionsFile = $run_schedule
        loopType = random
        nReps = 1
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        Routine cpdm_trial
        Routine cpdm_trial_iti1
      LoopTerminator cpdm_trials1
      Routine cpdm_run_break1
      Routine idm_term_check
    LoopTerminator condition_runs1
  LoopTerminator should_run1
  LoopInitiator should_run2 loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = loop2
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    Routine crdm_namer1
    Routine crdm_instr1
    Routine crdm_instr2
    Routine crdm_instr3
    Routine crdm_instr4
    Routine crdm_instr5
    Routine crdm_instr6
    Routine crdm_instr7
    Routine crdm_warn
    Routine crdm_pract_instr
    Routine crdm_init_fix
    LoopInitiator crdm_pract_trials1 loopType="TrialHandler"
      conditionsFile = crdm/crdm_practice.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'idm_task': 'crdm', 'item': 1, 'crdm_sure_amt': 5, 'crdm_sure_p': 100, 'crdm_lott_top': 20, 'crdm_lott_bot': 0, 'crdm_lott_p': 13, 'crdm_amb_lev': 0, 'crdm_domain': 'gain', 'crdm_img': 'risk_red_13.bmp', 'crdm_win_side': 'top'},
        {'idm_task': 'crdm', 'item': 2, 'crdm_sure_amt': 5, 'crdm_sure_p': 100, 'crdm_lott_top': 0, 'crdm_lott_bot': 50, 'crdm_lott_p': 25, 'crdm_amb_lev': 0, 'crdm_domain': 'gain', 'crdm_img': 'risk_blue_25.bmp', 'crdm_win_side': 'bottom'},
        {'idm_task': 'crdm', 'item': 3, 'crdm_sure_amt': 5, 'crdm_sure_p': 100, 'crdm_lott_top': 40, 'crdm_lott_bot': 0, 'crdm_lott_p': 50, 'crdm_amb_lev': 74, 'crdm_domain': 'gain', 'crdm_img': 'ambig_74.bmp', 'crdm_win_side': 'top'}]
      Routine crdm_pract_trial
      Routine crdm_feedback
      Routine crdm_conf
      Routine crdm_pract_iti1
    LoopTerminator crdm_pract_trials1
    Routine crdm_trial_instr
    Routine crdm_init_fix
    LoopInitiator crdm_trials1 loopType="TrialHandler"
      conditionsFile = crdm/crdm_trials.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'idm_task': 'crdm', 'item': 1, 'crdm_sure_amt': 5, 'crdm_sure_p': 100, 'crdm_lott_top': 5, 'crdm_lott_bot': 0, 'crdm_lott_p': 13, 'crdm_amb_lev': 0, 'crdm_domain': 'gain', 'crdm_img': 'risk_red_13.bmp', 'crdm_win_side': 'top', 'crdm_catch_trial': 1},
        {'idm_task': 'crdm', 'item': 2, 'crdm_sure_amt': 5, 'crdm_sure_p': 100, 'crdm_lott_top': 0, 'crdm_lott_bot': 8, 'crdm_lott_p': 13, 'crdm_amb_lev': 0, 'crdm_domain': 'gain', 'crdm_img': 'risk_blue_13.bmp', 'crdm_win_side': 'bottom', 'crdm_catch_trial': 1},
        {'idm_task': 'crdm', 'item': 3, 'crdm_sure_amt': 5, 'crdm_sure_p': 100, 'crdm_lott_top': 20, 'crdm_lott_bot': 0, 'crdm_lott_p': 13, 'crdm_amb_lev': 0, 'crdm_domain': 'gain', 'crdm_img': 'risk_red_13.bmp', 'crdm_win_side': 'top', 'crdm_catch_trial': 1},
        {'idm_task': 'crdm', 'item': 4, 'crdm_sure_amt': 5, 'crdm_sure_p': 100, 'crdm_lott_top': 0, 'crdm_lott_bot': 40, 'crdm_lott_p': 13, 'crdm_amb_lev': 0, 'crdm_domain': 'gain', 'crdm_img': 'risk_blue_13.bmp', 'crdm_win_side': 'bottom', 'crdm_catch_trial': 0},
        {'idm_task': 'crdm', 'item': 5, 'crdm_sure_amt': 5, 'crdm_sure_p': 100, 'crdm_lott_top': 50, 'crdm_lott_bot': 0, 'crdm_lott_p': 13, 'crdm_amb_lev': 0, 'crdm_domain': 'gain', 'crdm_img': 'risk_red_13.bmp', 'crdm_win_side': 'top', 'crdm_catch_trial': 0}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
      Routine crdm_trial
      Routine crdm_feedback
      Routine crdm_conf
      Routine crdm_trials_iti1
    LoopTerminator crdm_trials1
    Routine crdm_end
    Routine idm_term_check
  LoopTerminator should_run2
  LoopInitiator should_run3 loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = loop3
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    Routine cdd_namer1
    Routine cdd_instr1
    Routine cdd_instr2
    Routine cdd_instr3
    Routine cdd_warn
    Routine cdd_pract_instr
    Routine cdd_init_fix
    LoopInitiator cdd_pract_trials1 loopType="TrialHandler"
      conditionsFile = cdd/cdd_practice.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'idm_task': 'cdd', 'item': 1, 'cdd_immed_amt': 10, 'cdd_immed_wait': 0, 'cdd_delay_amt': 65, 'cdd_delay_wait': 9},
        {'idm_task': 'cdd', 'item': 2, 'cdd_immed_amt': 25, 'cdd_immed_wait': 0, 'cdd_delay_amt': 35, 'cdd_delay_wait': 150},
        {'idm_task': 'cdd', 'item': 3, 'cdd_immed_amt': 10, 'cdd_immed_wait': 0, 'cdd_delay_amt': 19, 'cdd_delay_wait': 89}]
      Routine cdd_pract_trial
      Routine cdd_feedback
      Routine cdd_conf
      Routine cdd_pract_iti1
    LoopTerminator cdd_pract_trials1
    Routine cdd_trial_instr
    Routine cdd_init_fix
    LoopInitiator cdd_trials1 loopType="TrialHandler"
      conditionsFile = cdd/cdd_trials.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'idm_task': 'cdd', 'item': 1, 'cdd_immed_amt': 15, 'cdd_immed_wait': 0, 'cdd_delay_amt': 19, 'cdd_delay_wait': 90, 'cdd_catch_trial': 0},
        {'idm_task': 'cdd', 'item': 2, 'cdd_immed_amt': 15, 'cdd_immed_wait': 0, 'cdd_delay_amt': 20, 'cdd_delay_wait': 5, 'cdd_catch_trial': 0},
        {'idm_task': 'cdd', 'item': 3, 'cdd_immed_amt': 15, 'cdd_immed_wait': 0, 'cdd_delay_amt': 20, 'cdd_delay_wait': 11, 'cdd_catch_trial': 0},
        {'idm_task': 'cdd', 'item': 4, 'cdd_immed_amt': 15, 'cdd_immed_wait': 0, 'cdd_delay_amt': 20, 'cdd_delay_wait': 59, 'cdd_catch_trial': 0},
        {'idm_task': 'cdd', 'item': 5, 'cdd_immed_amt': 15, 'cdd_immed_wait': 0, 'cdd_delay_amt': 20, 'cdd_delay_wait': 150, 'cdd_catch_trial': 0},
        {'idm_task': 'cdd', 'item': 6, 'cdd_immed_amt': 15, 'cdd_immed_wait': 0, 'cdd_delay_amt': 21, 'cdd_delay_wait': 31, 'cdd_catch_trial': 0},
        {'idm_task': 'cdd', 'item': 7, 'cdd_immed_amt': 15, 'cdd_immed_wait': 0, 'cdd_delay_amt': 24, 'cdd_delay_wait': 59, 'cdd_catch_trial': 0},
        {'idm_task': 'cdd', 'item': 8, 'cdd_immed_amt': 15, 'cdd_immed_wait': 0, 'cdd_delay_amt': 24, 'cdd_delay_wait': 150, 'cdd_catch_trial': 0},
        {'idm_task': 'cdd', 'item': 9, 'cdd_immed_amt': 15, 'cdd_immed_wait': 0, 'cdd_delay_amt': 25, 'cdd_delay_wait': 10, 'cdd_catch_trial': 0},
        {'idm_task': 'cdd', 'item': 10, 'cdd_immed_amt': 15, 'cdd_immed_wait': 0, 'cdd_delay_amt': 25, 'cdd_delay_wait': 29, 'cdd_catch_trial': 0}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
      Routine cdd_trial
      Routine cdd_feedback
      Routine cdd_conf
      Routine cdd_trial_iti1
    LoopTerminator cdd_trials1
    Routine cdd_end
    Routine idm_term_check
  LoopTerminator should_run3
  LoopInitiator should_run4 loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = loop4
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    Routine cpdm_namer2
    Routine cpdm_instr1
    Routine cpdm_instr2
    Routine cpdm_instr3
    Routine cpdm_instr4
    Routine cpdm_warn
    Routine cpdm_pract_instr
    Routine cpdm_init_fix
    LoopInitiator cpdm_pract_trials2 loopType="TrialHandler"
      conditionsFile = cpdm/cpdm_practice.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'idm_task': 'cpdm', 'item': 1, 'cpdm_gabor_orient': 2.5, 'cpdm_gabor_contrast': 0.025},
        {'idm_task': 'cpdm', 'item': 2, 'cpdm_gabor_orient': 2, 'cpdm_gabor_contrast': 0.05},
        {'idm_task': 'cpdm', 'item': 3, 'cpdm_gabor_orient': 0, 'cpdm_gabor_contrast': 0.2},
        {'idm_task': 'cpdm', 'item': 4, 'cpdm_gabor_orient': -2, 'cpdm_gabor_contrast': 0.25},
        {'idm_task': 'cpdm', 'item': 5, 'cpdm_gabor_orient': -2.5, 'cpdm_gabor_contrast': 0.1}]
      Routine cpdm_pract_trial
      Routine cpdm_pract_iti2
    LoopTerminator cpdm_pract_trials2
    Routine cpdm_trial_instr
    LoopInitiator condition_runs2 loopType="TrialHandler"
      conditionsFile = cpdm/cpdm_run_type.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'cpdm_run_dimension': 'low_vol_low_risk'},
        {'cpdm_run_dimension': 'low_vol_high_risk'},
        {'cpdm_run_dimension': 'high_vol_low_risk'},
        {'cpdm_run_dimension': 'high_vol_high_risk'}]
      Routine cpdm_run_setter
      Routine cpdm_loop_instr
      Routine cpdm_init_fix
      LoopInitiator cpdm_trials2 loopType="TrialHandler"
        conditionsFile = $run_schedule
        loopType = random
        nReps = 1
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        Routine cpdm_trial
        Routine cpdm_trials_iti2
      LoopTerminator cpdm_trials2
      Routine cpdm_run_break2
      Routine idm_term_check
    LoopTerminator condition_runs2
  LoopTerminator should_run4
  LoopInitiator should_run5 loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = loop5
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    Routine crdm_namer2
    Routine crdm_instr1
    Routine crdm_instr2
    Routine crdm_instr3
    Routine crdm_instr4
    Routine crdm_instr5
    Routine crdm_instr6
    Routine crdm_instr7
    Routine crdm_warn
    Routine crdm_pract_instr
    Routine crdm_init_fix
    LoopInitiator crdm_pract_trials2 loopType="TrialHandler"
      conditionsFile = crdm/crdm_practice.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'idm_task': 'crdm', 'item': 1, 'crdm_sure_amt': 5, 'crdm_sure_p': 100, 'crdm_lott_top': 20, 'crdm_lott_bot': 0, 'crdm_lott_p': 13, 'crdm_amb_lev': 0, 'crdm_domain': 'gain', 'crdm_img': 'risk_red_13.bmp', 'crdm_win_side': 'top'},
        {'idm_task': 'crdm', 'item': 2, 'crdm_sure_amt': 5, 'crdm_sure_p': 100, 'crdm_lott_top': 0, 'crdm_lott_bot': 50, 'crdm_lott_p': 25, 'crdm_amb_lev': 0, 'crdm_domain': 'gain', 'crdm_img': 'risk_blue_25.bmp', 'crdm_win_side': 'bottom'},
        {'idm_task': 'crdm', 'item': 3, 'crdm_sure_amt': 5, 'crdm_sure_p': 100, 'crdm_lott_top': 40, 'crdm_lott_bot': 0, 'crdm_lott_p': 50, 'crdm_amb_lev': 74, 'crdm_domain': 'gain', 'crdm_img': 'ambig_74.bmp', 'crdm_win_side': 'top'}]
      Routine crdm_pract_trial
      Routine crdm_feedback
      Routine crdm_conf
      Routine crdm_pract_iti2
    LoopTerminator crdm_pract_trials2
    Routine crdm_trial_instr
    Routine crdm_init_fix
    LoopInitiator crdm_trials2 loopType="TrialHandler"
      conditionsFile = crdm/crdm_trials.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'idm_task': 'crdm', 'item': 1, 'crdm_sure_amt': 5, 'crdm_sure_p': 100, 'crdm_lott_top': 5, 'crdm_lott_bot': 0, 'crdm_lott_p': 13, 'crdm_amb_lev': 0, 'crdm_domain': 'gain', 'crdm_img': 'risk_red_13.bmp', 'crdm_win_side': 'top'},
        {'idm_task': 'crdm', 'item': 2, 'crdm_sure_amt': 5, 'crdm_sure_p': 100, 'crdm_lott_top': 0, 'crdm_lott_bot': 8, 'crdm_lott_p': 13, 'crdm_amb_lev': 0, 'crdm_domain': 'gain', 'crdm_img': 'risk_blue_13.bmp', 'crdm_win_side': 'bottom'},
        {'idm_task': 'crdm', 'item': 3, 'crdm_sure_amt': 5, 'crdm_sure_p': 100, 'crdm_lott_top': 20, 'crdm_lott_bot': 0, 'crdm_lott_p': 13, 'crdm_amb_lev': 0, 'crdm_domain': 'gain', 'crdm_img': 'risk_red_13.bmp', 'crdm_win_side': 'top'},
        {'idm_task': 'crdm', 'item': 4, 'crdm_sure_amt': 5, 'crdm_sure_p': 100, 'crdm_lott_top': 0, 'crdm_lott_bot': 40, 'crdm_lott_p': 13, 'crdm_amb_lev': 0, 'crdm_domain': 'gain', 'crdm_img': 'risk_blue_13.bmp', 'crdm_win_side': 'bottom'},
        {'idm_task': 'crdm', 'item': 5, 'crdm_sure_amt': 5, 'crdm_sure_p': 100, 'crdm_lott_top': 50, 'crdm_lott_bot': 0, 'crdm_lott_p': 13, 'crdm_amb_lev': 0, 'crdm_domain': 'gain', 'crdm_img': 'risk_red_13.bmp', 'crdm_win_side': 'top'},
        {'idm_task': 'crdm', 'item': 6, 'crdm_sure_amt': 5, 'crdm_sure_p': 100, 'crdm_lott_top': 0, 'crdm_lott_bot': 5, 'crdm_lott_p': 25, 'crdm_amb_lev': 0, 'crdm_domain': 'gain', 'crdm_img': 'risk_blue_25.bmp', 'crdm_win_side': 'bottom'}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
      Routine crdm_trial
      Routine crdm_feedback
      Routine crdm_conf
      Routine crdm_trials_iti2
    LoopTerminator crdm_trials2
    Routine crdm_end
    Routine idm_term_check
  LoopTerminator should_run5
  LoopInitiator should_run6 loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = loop6
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    Routine cdd_namer2
    Routine cdd_instr1
    Routine cdd_instr2
    Routine cdd_instr3
    Routine cdd_warn
    Routine cdd_pract_instr
    Routine cdd_init_fix
    LoopInitiator cdd_pract_trials2 loopType="TrialHandler"
      conditionsFile = cdd/cdd_practice.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'idm_task': 'cdd', 'item': 1, 'cdd_immed_amt': 10, 'cdd_immed_wait': 0, 'cdd_delay_amt': 65, 'cdd_delay_wait': 9},
        {'idm_task': 'cdd', 'item': 2, 'cdd_immed_amt': 25, 'cdd_immed_wait': 0, 'cdd_delay_amt': 35, 'cdd_delay_wait': 150},
        {'idm_task': 'cdd', 'item': 3, 'cdd_immed_amt': 10, 'cdd_immed_wait': 0, 'cdd_delay_amt': 19, 'cdd_delay_wait': 89}]
      Routine cdd_pract_trial
      Routine cdd_feedback
      Routine cdd_conf
      Routine cdd_pract_iti2
    LoopTerminator cdd_pract_trials2
    Routine cdd_trial_instr
    Routine cdd_init_fix
    LoopInitiator cdd_trials2 loopType="TrialHandler"
      conditionsFile = cdd/cdd_trials.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'idm_task': 'cdd', 'item': 1, 'cdd_immed_amt': 15, 'cdd_immed_wait': 0, 'cdd_delay_amt': 19, 'cdd_delay_wait': 90},
        {'idm_task': 'cdd', 'item': 2, 'cdd_immed_amt': 15, 'cdd_immed_wait': 0, 'cdd_delay_amt': 20, 'cdd_delay_wait': 5},
        {'idm_task': 'cdd', 'item': 3, 'cdd_immed_amt': 15, 'cdd_immed_wait': 0, 'cdd_delay_amt': 20, 'cdd_delay_wait': 11},
        {'idm_task': 'cdd', 'item': 4, 'cdd_immed_amt': 15, 'cdd_immed_wait': 0, 'cdd_delay_amt': 20, 'cdd_delay_wait': 59},
        {'idm_task': 'cdd', 'item': 5, 'cdd_immed_amt': 15, 'cdd_immed_wait': 0, 'cdd_delay_amt': 20, 'cdd_delay_wait': 150},
        {'idm_task': 'cdd', 'item': 6, 'cdd_immed_amt': 15, 'cdd_immed_wait': 0, 'cdd_delay_amt': 21, 'cdd_delay_wait': 31},
        {'idm_task': 'cdd', 'item': 7, 'cdd_immed_amt': 15, 'cdd_immed_wait': 0, 'cdd_delay_amt': 24, 'cdd_delay_wait': 59},
        {'idm_task': 'cdd', 'item': 8, 'cdd_immed_amt': 15, 'cdd_immed_wait': 0, 'cdd_delay_amt': 24, 'cdd_delay_wait': 150},
        {'idm_task': 'cdd', 'item': 9, 'cdd_immed_amt': 15, 'cdd_immed_wait': 0, 'cdd_delay_amt': 25, 'cdd_delay_wait': 10},
        {'idm_task': 'cdd', 'item': 10, 'cdd_immed_amt': 15, 'cdd_immed_wait': 0, 'cdd_delay_amt': 25, 'cdd_delay_wait': 29},
        {'idm_task': 'cdd', 'item': 11, 'cdd_immed_amt': 15, 'cdd_immed_wait': 0, 'cdd_delay_amt': 25, 'cdd_delay_wait': 91},
        {'idm_task': 'cdd', 'item': 12, 'cdd_immed_amt': 15, 'cdd_immed_wait': 0, 'cdd_delay_amt': 26, 'cdd_delay_wait': 6},
        {'idm_task': 'cdd', 'item': 13, 'cdd_immed_amt': 15, 'cdd_immed_wait': 0, 'cdd_delay_amt': 34, 'cdd_delay_wait': 60}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
      Routine cdd_trial
      Routine cdd_feedback
      Routine cdd_conf
      Routine cdd_trial_iti2
    LoopTerminator cdd_trials2
    Routine cdd_end
    Routine idm_term_check
  LoopTerminator should_run6
  LoopInitiator should_run7 loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = loop7
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    Routine cpdm_namer3
    Routine cpdm_instr1
    Routine cpdm_instr2
    Routine cpdm_instr3
    Routine cpdm_instr4
    Routine cpdm_warn
    Routine cpdm_pract_instr
    Routine cpdm_init_fix
    LoopInitiator cpdm_pract_trials3 loopType="TrialHandler"
      conditionsFile = cpdm/cpdm_practice.xlsx
      loopType = random
      nReps = 1
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      conditions:
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      Routine cpdm_pract_trial
      Routine cpdm_pract_iti3
    LoopTerminator cpdm_pract_trials3
    Routine cpdm_trial_instr
    LoopInitiator condition_runs3 loopType="TrialHandler"
      conditionsFile = cpdm/cpdm_run_type.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'cpdm_run_dimension': 'low_vol_low_risk'},
        {'cpdm_run_dimension': 'low_vol_high_risk'},
        {'cpdm_run_dimension': 'high_vol_low_risk'},
        {'cpdm_run_dimension': 'high_vol_high_risk'}]
      Routine cpdm_run_setter
      Routine cpdm_loop_instr
      Routine cpdm_init_fix
      LoopInitiator cpdm_trials3 loopType="TrialHandler"
        conditionsFile = $run_schedule
        loopType = random
        nReps = 1
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        Routine cpdm_trial
        Routine cpdm_trials_iti3
      LoopTerminator cpdm_trials3
      Routine cpdm_run_break3
      Routine idm_term_check
    LoopTerminator condition_runs3
  LoopTerminator should_run7
  Routine idm_rand_select
  Routine cpdm_bonus
  Routine crdm_bonus
  Routine cdd_bonus
  Routine idm_comp_code
