PsychoPy2experiment version="2024.2.1post4"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['2key.png', '4key.png', 'ambig_24.bmp', 'ambig_50.bmp', 'ambig_74.bmp', 'circle_green_20.bmp', 'crdm_practice.xlsx', 'crdm_trials.xlsx', 'risk_blue_13.bmp', 'risk_blue_25.bmp', 'risk_blue_38.bmp', 'risk_blue_50.bmp', 'risk_blue_75.bmp', 'risk_red_13.bmp', 'risk_red_25.bmp', 'risk_red_38.bmp', 'risk_red_50.bmp', 'risk_red_75.bmp']
  Save csv file = True
  Screen = 1
  Units = height
  Use version = 2024.2.1post4
  Window size (pixels) = [1707, 960]
  expName = rdm_v1
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine rdm_pract_feedback
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    CodeComponent rdm_pract_feedback_code
      Code Type = Both
      Begin JS Routine:
        if ((rdm_pract_trial_resp.keys === undefined)) {
            rdm_msg = "No response";
        } else {
            if (rdm_pract_trial_resp.corr) {
                rdm_msg = ("You chose: Certain $" + sure_amt.toString());
            } else {
                rdm_msg = "You chose: Lottery";
            }
        }
      Begin Routine:
        #Ss did not respond
        if len(pract_key) == 0:
            rdm_msg = "No response"
            #Ss chose sure $5
        elif pract_sure_key:
            rdm_msg = "You chose: Certain $" + str(sure_amt)
            #Ss chose lottery
        else:
            rdm_msg = "You chose: Lottery"
    TextComponent crdm_pract_feedback_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $crdm_msg
      wrapWidth = 1.5
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  Routine rdm_instructions1
    RoutineSettingsComponent rdm_instructions1
      saveStartStop = False
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    CodeComponent rdm_instructions1_JS
      Code Type = JS
      Begin JS Experiment:
        //function for random.random used in python
        random = {
        random: function(){return Math.random()},
        randint: function(start, end){return Math.round(Math.random() * (end - start) + start)},
        choices: function(items, weights){
            var i;
            for (i = 0; i < weights.length; i++)
                weights[i] += weights[i - 1] || 0;
            var random = Math.random() * weights[weights.length - 1];
            for (i = 0; i < weights.length; i++)
                if (weights[i] > random)
                    break;
            return items[i] }
        }
    CodeComponent rdm_instructions1_code
      Code Type = Both
      Before Experiment:
        import random

        earnings = []
        choice = []
        money = []
        trial_img = []
        top = []
        bottom = []
        outcome = []
        winning_side = []
      Before JS Experiment:
        var bottom, choice, earnings, money, outcome, top, trial_img, trial_type, winning_side;
        earnings = [];
        choice = [];
        money = [];
        trial_img = [];
        top = [];
        bottom = [];
        outcome = [];
        winning_side = [];
      Begin JS Routine:
        practice_loop_name = "rdm_pract_trials";
        loop_name = "rdm_trials";
      Begin Routine:
        #provides specific loop names for each of two interations of CRDM
        #to provide flexibility of crdm_pract_trial and crdm_trial routines
        practice_loop_name = "rdm_pract_trials"
        loop_name = "rdm_trials"
    TextComponent rdm_instructions1_txt
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        Welcome to the Risk and Ambiguity Task!

        In this decision making experiment, you will be asked to make several economic choices. For each trial, you will be given an option between (1) receiving a certain amount of money or (2) playing a lottery for the chance to win a larger amount of money.

        At the end of the experiment one trial will be selected at random. The amount you may have gained during this randomly selected trial will be added to your total participation earnings.
    TextComponent rdm_instructions1_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent rdm_instructions1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine rdm_instructions2
    RoutineSettingsComponent rdm_instructions2
      saveStartStop = False
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    TextComponent rdm_instructions2_txt
      letterHeight = 0.04
      pos = (-0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        *Playing the Lottery*

        The lottery consists of an imaginary bag containing 100 poker chips, some red and some blue. To play, you pull a random chip from the bag.

        The figure on the left represents the proportion of blue and red chips in the imaginary bag.

        In this example, most chips are blue (75 of 100) and fewer are red (25 of 100).
    ImageComponent rdm_instructions2_img
      image = risk_blue_75.bmp
      pos = (0.6, 0)
      saveStartStop = False
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent rdm_instructions2_lott0_txt
      letterHeight = 0.04
      pos = (0.6, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$0
      wrapWidth = 1.5
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    TextComponent rdm_instructions2_lott20_txt
      letterHeight = 0.04
      pos = (0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$20
      wrapWidth = 1.5
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    TextComponent rdm_instructions2_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent rdm_instructions2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine rdm_instructions3
    RoutineSettingsComponent rdm_instructions3
      saveStartStop = False
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    TextComponent rdm_instructions3_txt
      letterHeight = 0.04
      pos = (-0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        *Playing the Lottery*

        Given information about the number of blue and red chips in the bag, you can decide whether you would prefer a certain monetary outcome or if you would rather play the lottery for a chance to win a different amount.

        In this example, you have a 75% of winning \$20 by pulling a blue chip from the bag and a 25% chance of \$0 by pulling a red chip.

        The value for each color will change from bag to bag. Read the \$ amount above the red and below the blue to know the value of each chip color.
    ImageComponent rdm_instructions3_img
      image = risk_blue_75.bmp
      pos = (0.6, 0)
      saveStartStop = False
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent rdm_instructions3_lott0_txt
      letterHeight = 0.04
      pos = (0.6, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$0
      wrapWidth = 1.5
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    TextComponent rdm_instructions3_lott20_txt
      letterHeight = 0.04
      pos = (0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$20
      wrapWidth = 1.5
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    TextComponent rdm_instructions3_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent rdm_instructions3_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine rdm_instructions4
    RoutineSettingsComponent rdm_instructions4
      saveStartStop = False
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    TextComponent rdm_instructions4_txt
      letterHeight = 0.04
      pos = (-0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        *Playing the Lottery*

        For some lotteries, information about the contents of the bag may be partially hidden.

        In this example, the bag has at least 25 blue chips and 25 red chips. However, the color of the remaining 50 chips is unknown. The remaining 50 chips could be all red, all blue, or any combination of the two.
    ImageComponent rdm_instructions4_img
      image = ambig_50.bmp
      pos = (0.6, 0)
      saveStartStop = False
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent rdm_instructions4_lott0_txt
      letterHeight = 0.04
      pos = (0.6, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$0
      wrapWidth = 1.5
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    TextComponent rdm_instructions4_lott20_txt
      letterHeight = 0.04
      pos = (0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$20
      wrapWidth = 1.5
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    TextComponent rdm_instructions4_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent rdm_instructions4_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine rdm_instructions5
    RoutineSettingsComponent rdm_instructions5
      saveStartStop = False
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    TextComponent rdm_instructions5_txt
      letterHeight = 0.035
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = The lottery bag will appear in the center of the screen. The certain dollar amount will be presented on either the right or left side of the bag. In this example, the certain \$5 would be the left option, and the lottery would be the right option:
      wrapWidth = 1.5
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    ImageComponent rdm_instruction5_img
      image = risk_blue_75.bmp
      pos = (0, -0.05)
      saveStartStop = False
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent rdm_instructions5_lott_top_txt
      letterHeight = 0.04
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$0
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    TextComponent rdm_instructions5_lott_bot_txt
      letterHeight = 0.04
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$20
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    TextComponent rdm_instructions5_sure_txt
      letterHeight = 0.04
      pos = (-0.3, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        \$5
    TextComponent rdm_instructions5_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent rdm_instructions5_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine rdm_instructions6
    RoutineSettingsComponent rdm_instructions6
      saveStartStop = False
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    TextComponent rdm_instructions6_txt
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        When the green circle appears, use the number keys at the top of your keyboard to indicate your choice:

        Press 1 to select the left option
        Press 2 to select the right option
    ImageComponent rdm_instructions6_img
      image = 2key.png
      pos = (0, -0.1)
      saveStartStop = False
      size = (0.6, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent rdm_instructions6_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent rdm_instructions6_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine rdm_practice_instr
    RoutineSettingsComponent rdm_practice_instr
      saveStartStop = False
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    TextComponent rdm_practice_instr_txt
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        Now let's practice.

        When the green circle appears, indicate your decision by pressing 1 for the left option and 2 for the right option. Next, you will rate your confidence.
    TextComponent rdm_practice_instr_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to begin.
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    KeyboardComponent rdm_practice_instr_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine rdm_init_iti
    RoutineSettingsComponent rdm_init_iti
      saveStartStop = False
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    PolygonComponent polygon
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine rdm_pract_trial
    RoutineSettingsComponent rdm_pract_trial
      saveStartStop = False
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    CodeComponent rdm_pract_trial_code1
      Code Type = Auto->JS
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      Begin Experiment:
        #position of certain amount option
        sure_pos = []
        sure_resp = []
        crdm_msg = ""


        #stimuli positions and respective responses
        #left/right screen locations
        pos = [[-0.3, 0], [0.3, 0]]
        #1 = left, 2 = right
        resp = ['1', '2']
      Begin Routine:
        my_loop = eval(practice_loop_name)

        idx = random.randint(0,1)
        sure_pos = pos[idx]
        sure_resp = resp[idx]
        sure_amt = 5

        if idx == 0:
            lott_pos = pos[1]
        else:
            lott_pos = pos[0]
      End Routine:
        key = rdm_pract_trial_resp.keys
        sure_key = rdm_pract_trial_resp.corr
    ImageComponent rdm_pract_trial_img
      image [set every repeat] = $img
      saveStartStop = False
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent rdm_pract_trial_lott_top_txt
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $str("$"+str(lott_top))
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    TextComponent rdm_pract_trial_lott_bot_txt
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $str("$"+str(lott_bot))
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    TextComponent rdm_pract_trial_sure_amt_txt
      letterHeight = 0.06
      pos [set every repeat] = sure_pos
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text [set every repeat]:
        $str("$"+str(sure_amt))
    PolygonComponent rdm_pract_trial_cue
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, 1.0000, -1.0000
      saveStartStop = False
      shape = circle
      size = (0.04, 0.04)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 2
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    KeyboardComponent rdm_pract_trial_resp
      allowedKeys = '1', '2'
      correctAns = $sure_resp
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine rdm_feedback
    RoutineSettingsComponent rdm_feedback
      saveStartStop = False
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    CodeComponent rdm_feedback_code
      Code Type = Both
      Begin JS Routine:
        if ((key === undefined)) {
            rdm_msg = "No response";
        } else {
            if (sure_key) {
                rdm_msg = ("You chose: Certain $" + sure_amt.toString());
            } else {
                rdm_msg = "You chose: Lottery";
            }
        }
      Begin Routine:
        #Ss did not respond
        if len(key) == 0:
            rdm_msg = "No response"
            #Ss chose sure $5
        elif sure_key:
            rdm_msg = "You chose: Certain $" + str(sure_amt)
            #Ss chose lottery
        else:
            rdm_msg = "You chose: Lottery"
    TextComponent rdm_feedback_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $rdm_msg
      wrapWidth = 1.5
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  Routine rdm_pract_iti
    RoutineSettingsComponent rdm_pract_iti
      saveStartStop = False
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    CodeComponent rdm_pract_iti_code
      Code Type = Both
      Begin JS Routine:
        if (!(rdm_pract_trials.thisTrialN == undefined) && (rdm_pract_trials.thisTrialN === 4)) {
            continueRoutine = false;
        }
      Begin Routine:
        if rdm_pract_trials.thisTrialN == 4:
            continueRoutine = False
    PolygonComponent rdm_pract_iti_poly
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine rdm_trial_instr
    RoutineSettingsComponent rdm_trial_instr
      saveStartStop = False
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    CodeComponent rdm_trial_instr_code
      Code Type = Auto->JS
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      Begin Routine:
        iti_list = [random.random() for i in range(80)]
        s = sum(iti_list)
        iti_list = [i*80/s for i in iti_list]
    TextComponent rdm_trial_instr_txt
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now that you have practiced a few trials, we will begin the actual task.

        Remember to make your choice between the certain outcome and lottery as soon as you see the green circle. You will have 3 seconds to consider the options and 2 seconds to make your choice.
    TextComponent rdm_trial_instr_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to begin.
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    KeyboardComponent rdm_trial_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine rdm_trial
    RoutineSettingsComponent rdm_trial
      saveStartStop = False
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    CodeComponent rdm_trial_code
      Code Type = Both
      Begin Experiment:
        #used in variable ITI
        delta_time = 0
        #position of certain amount option
        sure_pos = []
        sure_resp = []
        crdm_msg = ""

        #stimuli positions and respective responses
        #left/right screen locations
        pos = [[-0.3, 0], [0.3, 0]]
        #1 = left, 2 = right
        resp = ["1", "2"]
      Begin JS Experiment:
        delta_time = 0;
        sure_pos = [];
        sure_resp = [];
        crdm_msg = "";
        pos = [[(- 0.3), 0], [0.3, 0]];
        resp = ["1", "2"];
      Begin JS Routine:
        my_loop = eval(loop_name);
        stop_timer = null;
        stopped_time = 0;
        lott_outcome = 0;
        idx = random.randint(0, 1);
        sure_pos = pos[idx];
        sure_resp = resp[idx];
        sure_amt = 5;
        if ((idx === 0)) {
            lott_pos = pos[1];
        } else {
            lott_pos = pos[0];
        }
      Begin Routine:
        #variable for saving data
        my_loop = eval(loop_name)
        stop_timer = None
        stopped_time = 0
        lott_outcome = 0

        #random index for certain outcome position and response
        idx = random.randint(0,1)
        sure_pos = pos[idx]
        sure_resp = resp[idx]
        sure_amt = 5

        #certain outcome screen position is left/right, lottery is opposite
        if idx == 0:
            lott_pos = pos[1]
        else:
            lott_pos = pos[0]
      Each Frame:
        #Ss responded
        if len(rdm_trial_resp.keys) == 1:
            if stop_timer == None:
                stop_timer = core.Clock()
            else:
                if stop_timer.getTime() >= 0.5:
                    continueRoutine = False
      Each JS Frame:
        if (!(rdm_trial_resp.keys === undefined) && (rdm_trial_resp.keys.length === 1)) {
            if ((stop_timer === null)) {
                stop_timer = new core.Clock();
            } else {
                if ((stop_timer.getTime() >= 0.5)) {
                    continueRoutine = false;
                }
            }
        }
      End JS Routine:
        key = rdm_trial_resp.keys;
        sure_key = rdm_trial_resp.corr;

        if ((((rdm_trial_resp.rt) === undefined) || (rdm_trial_resp.rt >= (2.2 - 0.5)))) {
            delta_time = 0;
        } else {
            delta_time = Math.max(0, (2.2 - (rdm_trial_resp.rt + stopped_time)));
        }
        if (!(rdm_trial_resp.keys === undefined) && (rdm_trial_resp.keys.length === 1)) {
            if ((sure_key === 1)) {
                earnings.push(["sure", 5, img, lott_top, lott_bot, (-1), win_side, domain]);
                my_loop.addData("crdm_choice", "sure");
            } else {
                lott_outcome = random.choices([0, 1], [100 - Number.parseInt(lott_p), Number.parseInt(lott_p)]);
                my_loop.addData("crdm_choice", "lott");
                my_loop.addData("lott_outcome", lott_outcome);
                if ((lott_outcome === 1)) {
                    if ((Number.parseInt(lott_top) !== 0)) {
                        earnings.push(["lott", lott_top, img, lott_top, lott_bot, lott_outcome, win_side, domain]);
                    } else {
                        earnings.push(["lott", lott_bot, img, lott_top, lott_bot, lott_outcome, win_side, domain]);
                    }
                } else {
                    earnings.push(["lott", 0, img, lott_top, lott_bot, lott_outcome, win_side, domain]);
                }
            }
        }
      End Routine:
        #variable for feedback routine
        key = rdm_trial_resp.keys
        #1 if certain $ selected
        sure_key = rdm_trial_resp.corr

        #delta time is leftover time excluding rt
        if type(rdm_trial_resp.rt) is list or rdm_trial_resp.rt >= 2 - 0.5:
            delta_time = 0
        else:
            delta_time = max(0, 2 - (rdm_trial_resp.rt + stopped_time))

        #code to conduct chip draw using bag probabilities and store/record outcome
        #response received
        if key == sure_resp:
            #certain option
            if sure_key == 1:
                #-1 is placeholder for lott_outcome
                earnings.append(("sure", 5, img, lott_top, lott_bot, -1, win_side, domain))
                my_loop.addData("crdm_choice", "sure")
            #lottery option
            else:
                #probability from bag parameters
                lott_outcome = random.choices([0,1], weights=[100-int(lott_p), int(lott_p)])[0]
                #record lottery outcome
                my_loop.addData("crdm_choice", "lott")
                my_loop.addData("lott_outcome", lott_outcome)
                #win
                if lott_outcome == 1:
                    #check which side was worth money
                    if int(lott_top) != 0:
                        #top side is winner
                        earnings.append(("lott", lott_top, img, lott_top, lott_bot, lott_outcome, win_side, domain))
                    else:
                        #bottom side is winner
                        earnings.append(("lott", lott_bot, img, lott_top, lott_bot, lott_outcome, win_side, domain))
                #lose
                else:
                    #losing lottery
                    earnings.append(("lott", 0, img, lott_top, lott_bot, lott_outcome, win_side, domain))
    ImageComponent rdm_trial_img
      image [set every repeat] = $img
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent rdm_trial_lott_top
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $str("$"+str(lott_top))
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    TextComponent rdm_trial_lott_bot
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $str("$"+str(lott_bot))
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    TextComponent rdm_trial_sure_amt
      letterHeight = 0.06
      pos [set every repeat] = sure_pos
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $str("$"+str(sure_amt))
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    PolygonComponent rdm_trial_cue
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, 1.0000, -1.0000
      shape = circle
      size = (0.04, 0.04)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 2
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    KeyboardComponent rdm_trial_resp
      allowedKeys = '1', '2'
      correctAns = $sure_resp
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine rdm_trials_iti
    RoutineSettingsComponent rdm_trials_iti
      saveStartStop = False
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    CodeComponent rdm_trials_ITI_code
      Code Type = Both
      Begin JS Routine:
        iti_time = (iti_list[my_loop.thisIndex] + delta_time);
        if (!(rdm_pract_trials.thisTrialN == undefined) && (rdm_pract_trials.thisTrialN === 79)) {
            continueRoutine = false;
        }
      Begin Routine:
        #variable ITI for non-practice trials
        iti_time = iti_list[my_loop.thisIndex] + delta_time

        if rdm_pract_trials.thisTrialN == 79:
            continueRoutine = False
      End JS Routine:
        my_loop.addData("delta_time", delta_time);
        my_loop.addData("iti_time", iti_time);
      End Routine:
        #record delta time
        my_loop.addData("delta_time", delta_time)
        #record iti time
        my_loop.addData("iti_time", iti_time)
    PolygonComponent rdm_trials_ITI_poly
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_time
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  Routine rdm_bonus
    RoutineSettingsComponent rdm_bonus
      saveStartStop = False
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    CodeComponent rdm_bonus_code
      Code Type = Auto->JS
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      Begin Experiment:
        choice_text = ""
        outcome_color = ""
        chip_color = [0,0,0]
        chip_text = ""
        choice_outcome = ""
        money_outcome = ""
      Begin Routine:
        #indexing example
        #certain chosen - ("sure", 5, img, lott_top, lott_bot, "-1", win_side, domain)
        #lotto chosen, win top - ("lott", lott_top, img, lott_top, lott_bot, lott_outcome, win_side, domain)
        #lotto chosen, win bottom - ("lott", lott_bot, img, lott_top, lott_bot, lott_outcome, win_side, domain)
        #lotto chosen, lose - ("lott", 0, img, lott_top, lott_bot, lott_outcome, win_side, domain)


        #random selection of bonus trial
        idx = int(random.random() * len(earnings))
        print(earnings[idx])
        choice, money, trial_img, top, bottom, outcome, winning_side, domain = earnings[idx]
        sure_amt = 5
        my_loop.addData("bonus_choice", choice)
        my_loop.addData("bonus_amount", money)

        red_win = False
        #red wins in non-ambiguous trial
        if "red" in trial_img:
            red_win = True
        #blue wins or ambiguous red trial
        else:
            #ambiguous trial
            if "ambig" in trial_img:
                #red wins
                if winning_side == "top":
                    red_win = True

        #text for bonus payment screen
        #Ss choice certain $5
        if choice == "sure":
            choice_text = "*CERTAIN*"
            outcome_color = "goldenrod"
            chip_color = [0,0,0]
            chip_text = ""
            choice_outcome = "$" + str(money)
            money_outcome = ""

        else: #Ss chose lottery
            choice_text = "*PLAY THE LOTTERY*"
            #Ss won
            if outcome == 1:
                if red_win == True:
                    outcome_color = "salmon"
                    chip_color = "salmon"
                    choice_outcome = "A red chip"
                    chip_text = "was drawn and you received"
                    money_outcome = "$"+str(money)
                    #was drawn and you received $" + str(money)
                else:
                    outcome_color = "cornflowerblue"
                    chip_color = "cornflowerblue"
                    choice_outcome = "A blue chip"
                    chip_text = "was drawn and you received"
                    money_outcome = "$"+str(money)
                    #was drawn and you received $" + str(money)
            #Ss lost
            if outcome == 0:
                if red_win == True:
                    outcome_color = "cornflowerblue"
                    chip_color = "cornflowerblue"
                    choice_outcome = "A blue chip"
                    chip_text = "was drawn and you received"
                    money_outcome = "$"+str(money)
                    #was drawn and you received $0"
                else:
                    outcome_color = "salmon"
                    chip_color = "salmon"
                    choice_outcome = "A red chip"
                    chip_text = "was drawn and you received"
                    money_outcome = "$"+str(money)
                    #was drawn and you received $0"
    ImageComponent rdm_bonus_img
      image [set every repeat] = $trial_img
      pos = (0.6, -0.1)
      saveStartStop = False
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent rdm_bonus_thanks_txt
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Thank you for participating in the Risk & Ambiguity Task!
      wrapWidth = 1.25
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    TextComponent rdm_bonus_lott_top
      letterHeight = 0.04
      pos = (0.6, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $str("$"+str(top))
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    TextComponent rdm_bonus_lott_bot
      letterHeight = 0.04
      pos = (0.6, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $str("$"+str(bottom))
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    TextComponent rdm_bonus_sure_amt_txt
      letterHeight = 0.04
      pos = (0.4, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $str("$"+str(sure_amt))
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    TextComponent rdm_bonus_prompt_txt
      letterHeight = 0.04
      pos = (-0.2, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = In the randomly selected trial, you chose:
      wrapWidth = 1
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    TextComponent rdm_bonus_choice_text_txt
      letterHeight = 0.05
      pos = (-0.2, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $choice_text
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    TextComponent rdm_bonus_choice_outcome_txt
      color [set every repeat] = $outcome_color
      letterHeight = 0.06
      pos = (-0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $choice_outcome
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    TextComponent rdm_bonus_drawn_txt
      letterHeight = 0.04
      pos = (-0.2, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $chip_text
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    TextComponent rdm_bonus_winnings_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.06
      pos = (-0.2, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $money_outcome
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    TextComponent rdm_bonus_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to end
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    KeyboardComponent rdm_bonus_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    PolygonComponent rdm_bonus_chip_poly
      fillColor [set every repeat] = $chip_color
      lineColor [set every repeat] = $chip_color
      shape = circle
      size = (0.075, 0.075)
      startVal [time (s)] = 0.0
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Flow
  Routine rdm_instructions1
  Routine rdm_instructions2
  Routine rdm_instructions3
  Routine rdm_instructions4
  Routine rdm_instructions5
  Routine rdm_instructions6
  Routine rdm_practice_instr
  Routine rdm_init_iti
  LoopInitiator rdm_pract_trials loopType="TrialHandler"
    conditionsFile = rdm_practice.xlsx
    loopType = random
    nReps = 0
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    conditions:
      [{'task': 'crdm', 'sure_amt': 5, 'sure_p': 100, 'lott_top': 20, 'lott_bot': 0, 'lott_p': 13, 'amb_lev': 0, 'domain': 'gain', 'img': 'risk_red_13.bmp', 'win_side': 'top'},
      {'task': 'crdm', 'sure_amt': 5, 'sure_p': 100, 'lott_top': 0, 'lott_bot': 50, 'lott_p': 25, 'amb_lev': 0, 'domain': 'gain', 'img': 'risk_blue_25.bmp', 'win_side': 'bottom'},
      {'task': 'crdm', 'sure_amt': 5, 'sure_p': 100, 'lott_top': 40, 'lott_bot': 0, 'lott_p': 50, 'amb_lev': 74, 'domain': 'gain', 'img': 'ambig_74.bmp', 'win_side': 'top'}]
    Routine rdm_pract_trial
    Routine rdm_feedback
    Routine rdm_pract_iti
  LoopTerminator rdm_pract_trials
  Routine rdm_trial_instr
  Routine rdm_init_iti
  LoopInitiator rdm_trials loopType="TrialHandler"
    conditionsFile = rdm_trials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'sure_amt': 5, 'sure_p': 100, 'lott_top': 5, 'lott_bot': 0, 'lott_p': 13, 'amb_lev': 0, 'domain': 'gain', 'img': 'risk_red_13.bmp', 'win_side': 'top'},
      {'sure_amt': 5, 'sure_p': 100, 'lott_top': 0, 'lott_bot': 8, 'lott_p': 13, 'amb_lev': 0, 'domain': 'gain', 'img': 'risk_blue_13.bmp', 'win_side': 'bottom'},
      {'sure_amt': 5, 'sure_p': 100, 'lott_top': 20, 'lott_bot': 0, 'lott_p': 13, 'amb_lev': 0, 'domain': 'gain', 'img': 'risk_red_13.bmp', 'win_side': 'top'},
      {'sure_amt': 5, 'sure_p': 100, 'lott_top': 0, 'lott_bot': 40, 'lott_p': 13, 'amb_lev': 0, 'domain': 'gain', 'img': 'risk_blue_13.bmp', 'win_side': 'bottom'},
      {'sure_amt': 5, 'sure_p': 100, 'lott_top': 50, 'lott_bot': 0, 'lott_p': 13, 'amb_lev': 0, 'domain': 'gain', 'img': 'risk_red_13.bmp', 'win_side': 'top'},
      {'sure_amt': 5, 'sure_p': 100, 'lott_top': 0, 'lott_bot': 5, 'lott_p': 25, 'amb_lev': 0, 'domain': 'gain', 'img': 'risk_blue_25.bmp', 'win_side': 'bottom'},
      {'sure_amt': 5, 'sure_p': 100, 'lott_top': 8, 'lott_bot': 0, 'lott_p': 25, 'amb_lev': 0, 'domain': 'gain', 'img': 'risk_red_25.bmp', 'win_side': 'top'},
      {'sure_amt': 5, 'sure_p': 100, 'lott_top': 0, 'lott_bot': 20, 'lott_p': 25, 'amb_lev': 0, 'domain': 'gain', 'img': 'risk_blue_25.bmp', 'win_side': 'bottom'},
      {'sure_amt': 5, 'sure_p': 100, 'lott_top': 40, 'lott_bot': 0, 'lott_p': 25, 'amb_lev': 0, 'domain': 'gain', 'img': 'risk_red_25.bmp', 'win_side': 'top'}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
    Routine rdm_trial
    Routine rdm_feedback
    Routine rdm_trials_iti
  LoopTerminator rdm_trials
  Routine rdm_bonus
