PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = pygame
  Data filename = u'data/sub-%s/sub-%s_ses%s-crdm_task' % (expInfo['participant'], expInfo['participant'], expInfo['session'])
  Experiment info = {'participant': '', 'session': ''}
  Force stereo = False
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['images/crdm_instrV5-2.mp4', 'crdm_child_trials_TEST.csv', 'crdm_child_practice.csv', 'crdm_child_trials.csv', 'images/machine_b2_r6.png', 'images/machine_b4_r4.png', 'images/machine_b6_r2.png', 'images/machine_sure1.png']
  Screen = 1
  Units = height
  Use version = 2023.2.3
  Window size (pixels) = [1920, 1080]
  expName = crdm_child
  keyboardBackend = Pyglet
  runMode = 1
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Routines
  Routine crdm_instr2
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    TextComponent crdm_instr2_lottname_txt
      letterHeight = 0.05
      pos = (-0.2, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = *Playing the Lottery*
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    TextComponent crdm_instr2_txt
      letterHeight = 0.04
      pos = (-0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        The lottery consists of an imaginary bag containing 100 poker chips, some red and some blue. To play, you pull a random chip from the bag.

        The figure on the right represents the proportion of blue and red chips in the imaginary bag.

        In this example, most chips are blue (75 of 100) and fewer are red (25 of 100).
    ImageComponent crdm_instr2_img
      image = images/risk_blue_75.bmp
      pos = (0.6, 0)
      saveStartStop = False
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent crdm_instr2_lott0_txt
      letterHeight = 0.04
      pos = (0.6, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$0
      wrapWidth = 1.5
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    TextComponent crdm_instr2_lott20_txt
      letterHeight = 0.04
      pos = (0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$20
      wrapWidth = 1.5
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    TextComponent crdm_instr2_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_instr3
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    TextComponent crdm_instr3_lottname_txt
      letterHeight = 0.05
      pos = (-0.2, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = *Playing the Lottery*
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    TextComponent crdm_instr3_txt
      letterHeight = 0.035
      pos = (-0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Given information about the number of blue and red chips in the bag, you can decide whether you would prefer a certain monetary outcome or if you would rather play the lottery for a chance to win a different outcome

        In this example, you have a 75% chance of pulling a blue chip and winning \$20. Conversely, you have a 25% chance of pulling a red chip and receiving \$0.

        The value for each color will change from bag to bag. The choice could involve either winning or losing money. Read the \$ amount above the red and below the blue to know the value of each chip color.
    ImageComponent crdm_instr3_img
      image = images/risk_blue_75.bmp
      pos = (0.6, 0)
      saveStartStop = False
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent crdm_instr3_lott0_txt
      letterHeight = 0.04
      pos = (0.6, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$0
      wrapWidth = 1.5
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    TextComponent crdm_instr3_lott20_txt
      letterHeight = 0.04
      pos = (0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$20
      wrapWidth = 1.5
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    TextComponent crdm_instr3_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr3_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_instr4
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    TextComponent crdm_instr4_lottname_txt
      letterHeight = 0.05
      pos = (-0.2, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = *Playing the Lottery*
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    TextComponent crdm_instr4_txt
      letterHeight = 0.04
      pos = (-0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        For some lotteries, information about the contents of the bag may be partially hidden.

        In this example, the bag has at least 25 blue chips and 25 red chips. However, the color of the remaining 50 chips is unknown. The remaining 50 chips could be all red, all blue, or any combination of the two.
    ImageComponent crdm_instr4_img
      image = images/ambig_50.bmp
      pos = (0.6, 0)
      saveStartStop = False
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent crdm_instr4_lott0_txt
      letterHeight = 0.04
      pos = (0.6, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$0
      wrapWidth = 1.5
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    TextComponent crdm_instr4_lott20_txt
      letterHeight = 0.04
      pos = (0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$20
      wrapWidth = 1.5
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    TextComponent crdm_instr4_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr4_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_instr5
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    TextComponent crdm_instr5_txt
      letterHeight = 0.035
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = The lottery bag will appear in the center of the screen. The certain dollar amount will be presented on either the right or left side of the bag. In this example, the certain \$5 would be the left option, and the lottery would be the right option:
      wrapWidth = 1.5
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    ImageComponent crdm_instr5_img
      image = images/risk_blue_75.bmp
      pos = (0, -0.05)
      saveStartStop = False
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent crdm_instr5_lott_top_txt
      letterHeight = 0.04
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$0
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    TextComponent crdm_instr5_lott_bot_txt
      letterHeight = 0.04
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$20
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    TextComponent crdm_instr5_sure_txt
      letterHeight = 0.06
      pos = (-0.5, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$5
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    TextComponent crdm_instr5_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr5_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_instr6
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    TextComponent crdm_instr6_txt
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        When the green circle appears, use the number keys at the top of your keyboard to indicate your choice:

        Press 1 to select the left option
        Press 2 to select the right option
    ImageComponent crdm_instr6_img
      image = images/2key.png
      pos = (0, -0.1)
      saveStartStop = False
      size = (0.6, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent crdm_instr6_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr6_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_instr7
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    TextComponent crdm_instr7_txt
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.35
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      text:
        After each choice, you will be asked to rate your choice confidence.
        1 indicates you couldn't decide which option you preferred and chose at random, while 4 indicates total certainty in your choice. Use the number keys at the top of your keyboard to indicate your confidence:

        Press 1 - Not at all confident
        Press 2 - Less confident
        Press 3 - Somewhat confident
        Press 4 - Very confident
    ImageComponent crdm_instr7_img
      image = images/4key.png
      pos = (0, -0.15)
      saveStartStop = False
      size = (0.6, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent crdm_instr7_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr7_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_pract_instr
    RoutineSettingsComponent crdm_pract_instr
      saveStartStop = False
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    TextComponent crdm_pract_instr_name_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * The Lottery Game *
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    TextComponent crdm_pract_instr_txt
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        Let's practice how to play! When you see a green circle:

        Press 1 ----> LEFT Gumball Machine
        Press 2 ----> RIGHT Gumball Machine

        Then we'll ask how sure you are that you picked your favorite.
    TextComponent crdm_pract_instr_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to begin.
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    KeyboardComponent crdm_pract_instr_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_pract_init_fix
    RoutineSettingsComponent crdm_pract_init_fix
      saveStartStop = False
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    PolygonComponent crdm_init_fix_poly_2
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine crdm_pract_trial
    RoutineSettingsComponent crdm_pract_trial
      saveStartStop = False
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    CodeComponent crdm_pract_trial_py
      Code Type = Both
      Begin Experiment:
        #position of certain amount option
        sure_pos = []
        sure_resp = []
        crdm_msg = ""

        #stimuli positions and respective responses
        #left/right screen locations
        pos = [[-0.5, 0], [0.5, 0]]
        txt = [[-0.5, 0.15], [0.5, 0.15]]
        left = [[-0.565, 0.15], [0.435, 0.15]]
        right = [[-0.435, 0.15], [0.565, 0.15]]
        #1 = left, 2 = right
        resp = ["1", "2"]
      Begin JS Experiment:
        sure_pos = [];
        sure_resp = [];
        crdm_msg = "";
        pos = [[(- 0.5), 0], [0.5, 0]];
        txt = [[(- 0.5), 0.15], [0.5, 0.15]];
        left = [[(- 0.565), 0.15], [0.435, 0.15]];
        right = [[(- 0.435), 0.15], [0.565, 0.15]];
        resp = ["1", "2"];
      Begin JS Routine:
        my_loop = eval(practice_loop_name);
        idx = random.randint(0,1);
        sure_resp = resp[idx];
        if ((idx === 0)) {
            lott_pos = pos[1];
            left_pos = left[1];
            right_pos = right[1];
            sure_pos = pos[0];
            sure_txt = txt[0];
        } else {
            lott_pos = pos[0];
            left_pos = left[0];
            right_pos = right[0];
            sure_pos = pos[1];
            sure_txt = txt[1];
        }
      Begin Routine:
        my_loop = eval(practice_loop_name)

        #random index for certain outcome position and response
        idx = random.randint(0,1)
        #sure_pos = pos[idx]
        sure_resp = resp[idx]
        #sure_txt = txt[idx]

        if idx == 0:
            lott_pos = pos[1]
            left_pos = left[1]
            right_pos = right[1]
            sure_pos = pos[0]
            sure_txt = txt[0]
        else:
            lott_pos = pos[0]
            left_pos = left[0]
            right_pos = right[0]
            sure_pos = pos[1]
            sure_txt = txt[1]
      End JS Routine:
        pract_key = crdm_pract_trial_resp.keys;
        pract_sure_key = crdm_pract_trial_resp.corr;
        my_loop.addData("crdm_trial_type", "practice");
      End Routine:
        pract_key = crdm_pract_trial_resp.keys
        pract_sure_key = crdm_pract_trial_resp.corr

        my_loop.addData("crdm_trial_type", "practice")
    ImageComponent crdm_pract_trial_lott_img
      image [set every repeat] = $"images/" + crdm_img
      pos [set every repeat] = lott_pos
      saveStartStop = False
      size = (0.3, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent crdm_pract_trial_lott_left_txt
      color = -0.2157, 0.1686, 0.8588
      letterHeight = 0.035
      pos [set every repeat] = left_pos
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $str("$"+str(crdm_lott_left))
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    TextComponent crdm_pract_trial_lott_right_txt
      color = 0.7255, -0.8431, -0.5294
      letterHeight = 0.035
      pos [set every repeat] = right_pos
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $str("$"+str(crdm_lott_right))
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    TextComponent crdm_pract_trial_OR_txt
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = OR
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    ImageComponent crdm_pract_trial_sure_img
      image = images/machine_sure1.png
      pos [set every repeat] = sure_pos
      saveStartStop = False
      size = (0.3, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent crdm_pract_trial_sure_txt
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.035
      pos [set every repeat] = sure_txt
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text [set every repeat]:
        $str("$"+str(crdm_sure_amt))
    PolygonComponent GRFX_fix2
      fillColor = [0,0,0]
      lineColor = [0,0,0]
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
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    PolygonComponent crdm_pract_trial_cue
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, 1.0000, -1.0000
      saveStartStop = False
      shape = circle
      size = (0.04, 0.04)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
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    KeyboardComponent crdm_pract_trial_resp
      allowedKeys = '1', '2'
      correctAns = $sure_resp
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine crdm_pract_feedback
    RoutineSettingsComponent crdm_pract_feedback
      saveStartStop = False
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    CodeComponent crdm_pract_feedback_py
      Code Type = Both
      Begin JS Routine:
        if ((pract_key === undefined)) {
            crdm_msg = "NO RESPONSE";
        } else {
            if (pract_sure_key) {
                crdm_msg = ("CERTAIN $" + crdm_sure_amt.toString());
            } else {
                crdm_msg = "PLAY THE LOTTERY";
            }
        }
      Begin Routine:
        #Ss did not respond
        if len(pract_key) == 0:
            crdm_msg = "NO RESPONSE"
            #Ss chose sure $5
        elif pract_sure_key:
            crdm_msg = "CERTAIN $" + str(crdm_sure_amt)
            #Ss chose lottery
        else:
            crdm_msg = "PLAY THE LOTTERY"
    TextComponent crdm_pract_feedback_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $crdm_msg
      wrapWidth = 1.5
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  Routine crdm_pract_conf
    RoutineSettingsComponent crdm_pract_conf
      saveStartStop = False
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    CodeComponent crdm_pract_conf_py
      Code Type = Both
      Begin JS Routine:
        if ((pract_key === undefined)) {
            continueRoutine = false;
        }
        conf1_color = [0, 0, 0];
        conf2_color = [0, 0, 0];
        conf3_color = [0, 0, 0];
        conf4_color = [0, 0, 0];
      Begin Routine:
        #Ss did not respond
        if len(pract_key) == 0:
            continueRoutine = False

        #set default gray for all four response boxes
        conf1_color = [0, 0, 0]
        conf2_color = [0, 0, 0]
        conf3_color = [0, 0, 0]
        conf4_color = [0, 0, 0]
      Each Frame:
        #resp is received
        pract_conf_key = crdm_pract_conf_resp.keys
        if len(pract_conf_key) == 1:
            #not at all confident
            if pract_conf_key == "1":
                #change box color to indicate selection
                conf1_color = "darkgray"
                conf2_color = [0,0,0]
                conf3_color = [0,0,0]
                conf4_color = [0,0,0]
            #less confident
            elif pract_conf_key == "2":
                conf1_color = [0,0,0]
                conf2_color = "darkgray"
                conf3_color = [0,0,0]
                conf4_color = [0,0,0]
            #somewhat confident
            elif pract_conf_key == "3":
                conf1_color = [0,0,0]
                conf2_color = [0,0,0]
                conf3_color = "darkgray"
                conf4_color = [0,0,0]
            #very confident
            elif pract_conf_key == "4":
                conf1_color = [0,0,0]
                conf2_color = [0,0,0]
                conf3_color = [0,0,0]
                conf4_color = "darkgray"
      Each JS Frame:
        pract_conf_key = crdm_pract_conf_resp.keys;
        if (!(pract_conf_key === undefined) && (pract_conf_key.length === 1)) {
            if ((pract_conf_key === "1")) {
                conf1_color = "darkgray";
                conf2_color = [0, 0, 0];
                conf3_color = [0, 0, 0];
                conf4_color = [0, 0, 0];
            } else {
                if ((pract_conf_key === "2")) {
                    conf1_color = [0, 0, 0];
                    conf2_color = "darkgray";
                    conf3_color = [0, 0, 0];
                    conf4_color = [0, 0, 0];
                } else {
                    if ((pract_conf_key === "3")) {
                        conf1_color = [0, 0, 0];
                        conf2_color = [0, 0, 0];
                        conf3_color = "darkgray";
                        conf4_color = [0, 0, 0];
                    } else {
                        if ((pract_conf_key === "4")) {
                            conf1_color = [0, 0, 0];
                            conf2_color = [0, 0, 0];
                            conf3_color = [0, 0, 0];
                            conf4_color = "darkgray";
                        }
                    }
                }
            }
        }
      End JS Routine:
        conf1_color = [0, 0, 0];
        conf2_color = [0, 0, 0];
        conf3_color = [0, 0, 0];
        conf4_color = [0, 0, 0];

        crdm_pract_conf1.setFillColor(new util.Color(conf1_color), false);
        crdm_pract_conf2.setFillColor(new util.Color(conf2_color), false);
        crdm_pract_conf3.setFillColor(new util.Color(conf3_color), false);
        crdm_pract_conf4.setFillColor(new util.Color(conf4_color), false);
    TextComponent crdm_pract_conf_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Are you sure you picked your favorite?
      wrapWidth = 1.5
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    PolygonComponent crdm_pract_conf1
      fillColor [set every frame] = $conf1_color
      lineWidth = 10
      pos = (-0.6, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent crdm_pract_conf1_txt
      letterHeight = 0.04
      pos = (-0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text:
        Don't know if
        I picked my
        favorite

        1
    PolygonComponent crdm_pract_conf2
      fillColor [set every frame] = $conf2_color
      lineWidth = 10
      pos = (-0.2, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent crdm_pract_conf2_txt
      letterHeight = 0.04
      pos = (-0.2, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text:
        Maybe I picked
        my favorite


        2
    PolygonComponent crdm_pract_conf3
      fillColor [set every frame] = $conf3_color
      lineWidth = 10
      pos = (0.2, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent crdm_pract_conf3_txt
      letterHeight = 0.04
      pos = (0.2, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text:
        Pretty sure I
        picked my
        favorite

        3
    PolygonComponent crdm_pract_conf4
      fillColor [set every frame] = $conf4_color
      lineWidth = 10
      pos = (0.6, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent crdm_pract_conf4_txt
      letterHeight = 0.04
      pos = (0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text:
        I definitely
        picked my
        favorite

        4
    KeyboardComponent crdm_pract_conf_resp
      allowedKeys = '1', '2', '3', '4'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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  Routine crdm_pract_iti
    RoutineSettingsComponent crdm_pract_iti
      saveStartStop = False
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    CodeComponent crdm_pract_iti1_py
      Code Type = Both
      Begin JS Routine:
        if (!(crdm_pract_trials.thisTrialN === undefined) && (crdm_pract_trials.thisTrialN === 5)) {
            continueRoutine = false;
        }
      Begin Routine:
        #3 CRDM practice trials
        if crdm_pract_trials.thisTrialN == 5:
            continueRoutine = False
    PolygonComponent crdm_pract_iti1_poly
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine crdm_trial_instr
    RoutineSettingsComponent crdm_trial_instr
      saveStartStop = False
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    CodeComponent crdm_trial_instr_py
      Code Type = Both
      Begin JS Routine:
        task_resps = [];
        conf_resps = [];
        catch_trials = [];
        iti_list = function () {
            var _pj_a = [], _pj_b = util.range(180);
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var i = _pj_b[_pj_c];
                _pj_a.push(random.random());
            }
            return _pj_a;
        }
        .call(this);
        s = util.sum(iti_list);
        iti_list = function () {
            var _pj_a = [], _pj_b = iti_list;
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var i = _pj_b[_pj_c];
                _pj_a.push(((i * 180) / s));
            }
            return _pj_a;
        }
        .call(this);
      Begin Routine:
        #Task QC check variables
        task_resps = []
        conf_resps = []
        catch_trials = []

        #used for creation of ITI equalizer
        iti_list = [random.random() for i in range(180)]
        s = sum(iti_list)
        iti_list = [i*180/s for i in iti_list]
    TextComponent crdm_trial_instr_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * The Lottery Game *
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    TextComponent crdm_trial_instr_txt
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        Now we're about to begin the real game!

        Please focus on the white cross when it appears onscreen.
    TextComponent crdm_trial_instr_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to begin.
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    KeyboardComponent crdm_trial_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_init_fix
    RoutineSettingsComponent crdm_init_fix
      saveStartStop = False
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    PolygonComponent crdm_init_fix_poly
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine crdm_trial
    RoutineSettingsComponent crdm_trial
      saveStartStop = False
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    CodeComponent crdm_trial_py
      Code Type = Both
      Begin Experiment:
        #position of certain amount option
        sure_pos = []
        sure_resp = []
        crdm_msg = ""

        #stimuli positions and respective responses
        #left/right screen locations
        pos = [[-0.5, 0], [0.5, 0]]
        txt = [[-0.5, 0.15], [0.5, 0.15]]
        left = [[-0.565, 0.15], [0.435, 0.15]]
        right = [[-0.435, 0.15], [0.565, 0.15]]
        #1 = left, 2 = right
        resp = ["1", "2"]
      Begin JS Experiment:
        sure_pos = [];
        sure_resp = [];
        crdm_msg = "";
        pos = [[(- 0.5), 0], [0.5, 0]];
        txt = [[(- 0.5), 0.15], [0.5, 0.15]];
        left = [[(- 0.565), 0.15], [0.435, 0.15]];
        right = [[(- 0.435), 0.15], [0.565, 0.15]];
        resp = ["1", "2"];
      Begin JS Routine:
        my_loop = eval(loop_name);
        stop_timer = null;
        stopped_time = 0;
        lott_outcome = 0;

        idx = random.randint(0,1)
        sure_resp = resp[idx];
        if ((idx === 0)) {
            lott_pos = pos[1];
            left_pos = left[1];
            right_pos = right[1];
            sure_pos = pos[0];
            sure_txt = txt[0];
        } else {
            lott_pos = pos[0];
            left_pos = left[0];
            right_pos = right[0];
            sure_pos = pos[1];
            sure_txt = txt[1];
        }
      Begin Routine:
        #variable for saving data
        my_loop = eval(loop_name)
        stop_timer = None
        stopped_time = 0
        lott_outcome = 0

        #random index for certain outcome position and response
        idx = random.randint(0,1)
        #sure_pos = pos[idx]
        sure_resp = resp[idx]
        #sure_txt = txt[idx]

        if idx == 0:
            lott_pos = pos[1]
            left_pos = left[1]
            right_pos = right[1]
            sure_pos = pos[0]
            sure_txt = txt[0]
        else:
            lott_pos = pos[0]
            left_pos = left[0]
            right_pos = right[0]
            sure_pos = pos[1]
            sure_txt = txt[1]
      Each Frame:
        if len(crdm_trial_resp.keys) == 1: #Ss responded
            if stop_timer == None:
                stop_timer = core.Clock()
            else:
                if stop_timer.getTime() >= 0.5:
                    continueRoutine = False
      Each JS Frame:
        if (!(crdm_trial_resp.keys == undefined) && (crdm_trial_resp.keys.length === 1)) {
            if ((stop_timer === null)) {
                stop_timer = new util.Clock();
            } else {
                if ((stop_timer.getTime() >= 0.5)) {
                    continueRoutine = false;
                }
            }
        }
      End JS Routine:
        key = crdm_trial_resp.keys;
        sure_key = crdm_trial_resp.corr;
        my_loop.addData("crdm_trial_type", "task");
        if ((((crdm_trial_resp.rt) === undefined) || (crdm_trial_resp.rt >= (2 - 0.5)))) {
            delta_time = 0;
        } else {
            delta_time = Math.max(0, (2 - (crdm_trial_resp.rt + stopped_time)));
        }
        if (!(key === undefined) && (key.length === 1)) {
            if ((sure_key === 1)) {
                earnings.push(["sure", crdm_sure_amt, crdm_sure_amt, crdm_img, crdm_lott_left, crdm_lott_right, (- 1), crdm_nonzero_side, crdm_domain]);
                my_loop.addData("crdm_choice", 0);
                my_loop.addData("crdm_choice2", "sure");
                my_loop.addData("crdm_lott", "");
                my_loop.addData("crdm_lott2", "");
            } else {
                lott_outcome = random.choices([0, 1], [100 - Number.parseInt(crdm_lott_p), Number.parseInt(crdm_lott_p)]);
                my_loop.addData("crdm_choice", 1);
                my_loop.addData("crdm_choice2", "lott");
                my_loop.addData("crdm_lott", lott_outcome);
                if ((lott_outcome === 1)) {
                    my_loop.addData("crdm_lott2", "win");
                    if ((crdm_domain === "gain")) {
                        if ((Number.parseInt(crdm_lott_left) !== 0)) {
                            earnings.push(["lott", crdm_lott_left, crdm_sure_amt, crdm_img, crdm_lott_left, crdm_lott_right, lott_outcome, crdm_nonzero_side, crdm_domain]);
                        } else {
                            earnings.push(["lott", crdm_lott_right, crdm_sure_amt, crdm_img, crdm_lott_left, crdm_lott_right, lott_outcome, crdm_nonzero_side, crdm_domain]);
                        }
                    } else {
                        if ((crdm_domain === "loss")) {
                            if ((Number.parseInt(crdm_lott_left) === 0)) {
                                earnings.push(["lott", crdm_lott_left, crdm_sure_amt, crdm_img, crdm_lott_left, crdm_lott_right, lott_outcome, crdm_nonzero_side, crdm_domain]);
                            } else {
                                earnings.push(["lott", crdm_lott_right, crdm_sure_amt, crdm_img, crdm_lott_left, crdm_lott_right, lott_outcome, crdm_nonzero_side, crdm_domain]);
                            }
                        }
                    }
                } else {
                    my_loop.addData("crdm_lott2", "lose");
                    if ((crdm_domain === "gain")) {
                        if ((Number.parseInt(crdm_lott_left) === 0)) {
                            earnings.push(["lott", crdm_lott_left, crdm_sure_amt, crdm_img, crdm_lott_left, crdm_lott_right, lott_outcome, crdm_nonzero_side, crdm_domain]);
                        } else {
                            earnings.push(["lott", crdm_lott_right, crdm_sure_amt, crdm_img, crdm_lott_left, crdm_lott_right, lott_outcome, crdm_nonzero_side, crdm_domain]);
                        }
                    } else {
                        if ((crdm_domain === "loss")) {
                            if ((Number.parseInt(crdm_lott_left) < 0)) {
                                earnings.push(["lott", crdm_lott_left, crdm_sure_amt, crdm_img, crdm_lott_left, crdm_lott_right, lott_outcome, crdm_nonzero_side, crdm_domain]);
                            } else {
                                earnings.push(["lott", crdm_lott_right, crdm_sure_amt, crdm_img, crdm_lott_left, crdm_lott_right, lott_outcome, crdm_nonzero_side, crdm_domain]);
                            }
                        }
                    }
                }
            }
        }
      End Routine:
        #variable for feedback routine
        key = crdm_trial_resp.keys
        #1 if certain $ selected
        sure_key = crdm_trial_resp.corr
        my_loop.addData("crdm_trial_type", "task")

        #delta time is leftover time excluding rt
        if type(crdm_trial_resp.rt) is list or crdm_trial_resp.rt >= 2 - 0.5:
            delta_time = 0
        else:
            delta_time = max(0, 2 - (crdm_trial_resp.rt + stopped_time))

        #pseudo-random chip draw using bag probabilities and store/record outcome
        #response received
        if len(key) == 1:
            #certain option
            if sure_key == 1:
                #-1 is placeholder for lott_outcome
                earnings.append(("sure", crdm_sure_amt, crdm_sure_amt, crdm_img, crdm_lott_left, crdm_lott_right, -1, crdm_nonzero_side, crdm_domain))
                my_loop.addData("crdm_choice", 0)
                my_loop.addData("crdm_choice2", "sure")
                my_loop.addData("crdm_lott", "")
                my_loop.addData("crdm_lott2", "")
            #lottery option
            else:
                #probability from bag parameters
                lott_outcome = random.choices([0,1], weights=[100-int(crdm_lott_p), int(crdm_lott_p)])[0]
                #record Ss choice
                my_loop.addData("crdm_choice", 1)
                my_loop.addData("crdm_choice2", "lott")
                #record lottery outcome
                my_loop.addData("crdm_lott", lott_outcome)
                #win
                if lott_outcome == 1:
                    my_loop.addData("crdm_lott2", "win")
                    #check which side was worth money
                    if crdm_domain == "gain": #gain domain trial
                        if int(crdm_lott_left) != 0: #left (blue) side is winner
                            earnings.append(("lott", crdm_lott_left, crdm_sure_amt, crdm_img, crdm_lott_left, crdm_lott_right, lott_outcome, crdm_nonzero_side, crdm_domain))
                        else: #bottom side is winner
                            earnings.append(("lott", crdm_lott_right, crdm_sure_amt, crdm_img, crdm_lott_left, crdm_lott_right, lott_outcome, crdm_nonzero_side, crdm_domain))
                    elif crdm_domain == "loss": #loss domain trial
                        if int(crdm_lott_left) == 0: #left (blue) side is winner
                            earnings.append(("lott", crdm_lott_left, crdm_sure_amt, crdm_img, crdm_lott_left, crdm_lott_right, lott_outcome, crdm_nonzero_side, crdm_domain))
                        else: #right (red) is winner
                            earnings.append(("lott", crdm_lott_right, crdm_sure_amt, crdm_img, crdm_lott_left, crdm_lott_right, lott_outcome, crdm_nonzero_side, crdm_domain))
                #lose
                else: #losing lottery
                    my_loop.addData("crdm_lott2", "lose")
                    if crdm_domain == "gain": #gain domain trial
                        if int(crdm_lott_left) == 0: #left (blue) side is loser
                            earnings.append(("lott", crdm_lott_left, crdm_sure_amt, crdm_img, crdm_lott_left, crdm_lott_right, lott_outcome, crdm_nonzero_side, crdm_domain))
                        else: #bottom side is loser
                            earnings.append(("lott", crdm_lott_right, crdm_sure_amt, crdm_img, crdm_lott_left, crdm_lott_right, lott_outcome, crdm_nonzero_side, crdm_domain))
                    elif crdm_domain == "loss": #loss domain trial
                        if int(crdm_lott_left) < 0: #left (blue) side is loser
                            earnings.append(("lott", crdm_lott_left, crdm_sure_amt, crdm_img, crdm_lott_left, crdm_lott_right, lott_outcome, crdm_nonzero_side, crdm_domain))
                        else: #right (red) side is loser
                            earnings.append(("lott", crdm_lott_right, crdm_sure_amt, crdm_img, crdm_lott_left, crdm_lott_right, lott_outcome, crdm_nonzero_side, crdm_domain))
    ImageComponent crdm_trial_lott_img
      image [set every repeat] = $"images/" + crdm_img
      pos [set every repeat] = lott_pos
      saveStartStop = False
      size = (0.3, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    ImageComponent crdm_trial_sure_img
      image = images/machine_sure1.png
      pos [set every repeat] = sure_pos
      saveStartStop = False
      size = (0.3, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent crdm_trial_lott_left_txt
      color = -0.2157, 0.1686, 0.8588
      letterHeight = 0.035
      pos [set every repeat] = left_pos
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $str("$"+str(crdm_lott_left))
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    TextComponent crdm_trial_lott_right_txt
      color = 0.7255, -0.8431, -0.5294
      letterHeight = 0.035
      pos [set every repeat] = right_pos
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $str("$"+str(crdm_lott_right))
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    TextComponent crdm_trial_OR_txt
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = OR
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    TextComponent crdm_trial_sure_txt
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.035
      pos [set every repeat] = sure_txt
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text [set every repeat]:
        $str("$"+str(crdm_sure_amt))
    PolygonComponent GRFX_fix
      fillColor = [0,0,0]
      lineColor = [0,0,0]
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
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    PolygonComponent crdm_trial_cue
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, 1.0000, -1.0000
      saveStartStop = False
      shape = circle
      size = (0.04, 0.04)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
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    KeyboardComponent crdm_trial_resp
      allowedKeys = '1', '2'
      correctAns = $sure_resp
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine crdm_feedback
    RoutineSettingsComponent crdm_feedback
      saveStartStop = False
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    CodeComponent crdm_feedback_py
      Code Type = Both
      Begin JS Routine:
        if ((key === undefined)) {
            crdm_msg = "NO RESPONSE";
        } else {
            if (sure_key) {
                crdm_msg = ("CERTAIN $" + crdm_sure_amt.toString());
            } else {
                crdm_msg = "PLAY THE LOTTERY";
            }
        }
      Begin Routine:
        #Ss did not respond
        if len(key) == 0:
            crdm_msg = "NO RESPONSE"
            #Ss chose sure $5
        elif sure_key:
            crdm_msg = "CERTAIN $" + str(crdm_sure_amt)
            #Ss chose lottery
        else:
            crdm_msg = "PLAY THE LOTTERY"
    TextComponent crdm_feedback_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $crdm_msg
      wrapWidth = 1.5
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  Routine crdm_conf
    RoutineSettingsComponent crdm_conf
      saveStartStop = False
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    CodeComponent crdm_conf_py
      Code Type = Both
      Begin JS Routine:
        if ((key === undefined)) {
            continueRoutine = false;
        }
        conf1_color = [0, 0, 0];
        conf2_color = [0, 0, 0];
        conf3_color = [0, 0, 0];
        conf4_color = [0, 0, 0];
      Begin Routine:
        #Ss did not respond
        if len(key) == 0:
            continueRoutine = False

        #set default gray for all four response boxes
        conf1_color = [0, 0, 0]
        conf2_color = [0, 0, 0]
        conf3_color = [0, 0, 0]
        conf4_color = [0, 0, 0]
      Each Frame:
        #resp is received
        conf_key = crdm_conf_resp.keys
        if len(conf_key) == 1:
            #not at all confident
            if conf_key == "1":
                #change box color to indicate selection
                conf1_color = "darkgray"
                conf2_color = [0,0,0]
                conf3_color = [0,0,0]
                conf4_color = [0,0,0]
            #less confident
            elif conf_key == "2":
                conf1_color = [0,0,0]
                conf2_color = "darkgray"
                conf3_color = [0,0,0]
                conf4_color = [0,0,0]
            #somewhat confident
            elif conf_key == "3":
                conf1_color = [0,0,0]
                conf2_color = [0,0,0]
                conf3_color = "darkgray"
                conf4_color = [0,0,0]
            #very confident
            elif conf_key == "4":
                conf1_color = [0,0,0]
                conf2_color = [0,0,0]
                conf3_color = [0,0,0]
                conf4_color = "darkgray"
      Each JS Frame:
        conf_key = crdm_conf_resp.keys;
        if (!(conf_key === undefined) && (conf_key.length === 1)) {
            if ((conf_key === "1")) {
                conf1_color = "darkgray";
                conf2_color = [0, 0, 0];
                conf3_color = [0, 0, 0];
                conf4_color = [0, 0, 0];
            } else {
                if ((conf_key === "2")) {
                    conf1_color = [0, 0, 0];
                    conf2_color = "darkgray";
                    conf3_color = [0, 0, 0];
                    conf4_color = [0, 0, 0];
                } else {
                    if ((conf_key === "3")) {
                        conf1_color = [0, 0, 0];
                        conf2_color = [0, 0, 0];
                        conf3_color = "darkgray";
                        conf4_color = [0, 0, 0];
                    } else {
                        if ((conf_key === "4")) {
                            conf1_color = [0, 0, 0];
                            conf2_color = [0, 0, 0];
                            conf3_color = [0, 0, 0];
                            conf4_color = "darkgray";
                        }
                    }
                }
            }
        }
      End JS Routine:
        conf1_color = [0, 0, 0];
        conf2_color = [0, 0, 0];
        conf3_color = [0, 0, 0];
        conf4_color = [0, 0, 0];

        crdm_conf1.setFillColor(new util.Color(conf1_color), false);
        crdm_conf2.setFillColor(new util.Color(conf2_color), false);
        crdm_conf3.setFillColor(new util.Color(conf3_color), false);
        crdm_conf4.setFillColor(new util.Color(conf4_color), false);
    TextComponent crdm_conf_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Are you sure you picked your favorite?
      wrapWidth = 1.5
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    PolygonComponent crdm_conf1
      fillColor [set every frame] = $conf1_color
      lineWidth = 10
      pos = (-0.6, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent crdm_conf1_txt
      letterHeight = 0.04
      pos = (-0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text:
        Don't know if
        I picked my
        favorite

        1
    PolygonComponent crdm_conf2
      fillColor [set every frame] = $conf2_color
      lineWidth = 10
      pos = (-0.2, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent crdm_conf2_txt
      letterHeight = 0.04
      pos = (-0.2, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text:
        Maybe I picked
        my favorite


        2
    PolygonComponent crdm_conf3
      fillColor [set every frame] = $conf3_color
      lineWidth = 10
      pos = (0.2, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent crdm_conf3_txt
      letterHeight = 0.04
      pos = (0.2, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text:
        Pretty sure I
        picked my
        favorite

        3
    PolygonComponent crdm_conf4
      fillColor [set every frame] = $conf4_color
      lineWidth = 10
      pos = (0.6, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent crdm_conf4_txt
      letterHeight = 0.04
      pos = (0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text:
        I definitely
        picked my
        favorite

        4
    KeyboardComponent crdm_conf_resp
      allowedKeys = '1', '2', '3', '4'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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  Routine crdm_trial_iti
    RoutineSettingsComponent crdm_trial_iti
      saveStartStop = False
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    CodeComponent crdm_trial_iti1_py
      Code Type = Both
      Begin JS Routine:
        iti_time = (iti_list[my_loop.thisIndex] + delta_time);
        if (!(crdm_trials.thisTrialN === undefined) && (crdm_trials.thisTrialN === 179)) {
            continueRoutine = false;
        }
      Begin Routine:
        #variable ITI for non-practice trials
        iti_time = iti_list[my_loop.thisIndex] + delta_time
        #doesnt show fixation cross after last trial
        if crdm_trials.thisTrialN == 179: #180 trials
            continueRoutine = False
      End JS Routine:
        my_loop.addData("crdm_delta_time", delta_time);
        my_loop.addData("crdm_iti_time", iti_time);
      End Routine:
        #record delta time
        my_loop.addData("crdm_delta_time", delta_time)
        #record iti time
        my_loop.addData("crdm_iti_time", iti_time)
    PolygonComponent crdm_trial_iti1_poly
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_time
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  Routine crdm_bonus
    RoutineSettingsComponent crdm_bonus
      saveStartStop = False
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    CodeComponent crdm_bonus_code
      Code Type = JS
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      Begin JS Routine:
        exp = [];
        choice = [];
        money = [];
        trial_img = [];
        left = [];
        right = [];
        outcome = [];
        nonzero_side = [];
        domain = [];
        sure_amt = "";
        earnings_text = "";
        choice_text = "";
        outcome_color = [0, 0, 0];
        gumball_color = [0, 0, 0];
        gumball_text = "";
        choice_outcome = "";
        money_outcome = "";
        choice_img = "";
        sure_color = [0, 0, 0];
        left_color = [0, 0, 0];
        right_color = [0, 0, 0];
        idx = Number.parseInt((random.random() * earnings.length));
        console.log(earnings[idx]);
        [choice, money, sure_amt, trial_img, left, right, outcome, nonzero_side, domain] = earnings[idx];
        my_loop.addData("crdm_bonus_choice", choice);
        my_loop.addData("crdm_bonus_amt", money);
        red_nonzero = false;
        if ((nonzero_side === "right")) {
            red_nonzero = true;
        }
        if ((choice === "sure")) {
            choice_text = "*CERTAIN*";
            outcome_color = [0.7098, 0.2941, (- 0.749)];
            gumball_color = [(- 1), (- 1), (- 1)];
            gumball_text = "";
            choice_outcome = ("$" + money.toString());
            money_outcome = "";
            choice_img = "images/machine_sure1.png";
            sure_color = [(- 1), (- 1), (- 1)];
            left_color = [1, 1, 1];
            right_color = [1, 1, 1];
        } else {
            choice_text = "*PLAY THE LOTTERY*";
            choice_img = ("images/" + trial_img);
            sure_color = [1, 1, 1];
            left_color = [(- 0.2157), 0.1686, 0.8588];
            right_color = [0.9608, 0.0039, (- 0.1059)];
            if ((red_nonzero === true)) {
                if (((outcome === 1) && (domain === "gain"))) {
                    outcome_color = [0.9608, 0.0039, (- 0.1059)];
                    gumball_color = [0.9608, 0.0039, (- 0.1059)];
                    choice_outcome = "A red gumball";
                    gumball_text = "was drawn and the outcome was";
                    money_outcome = ("$" + money.toString());
                } else {
                    if (((outcome === 1) && (domain === "loss"))) {
                        outcome_color = [(- 0.2157), 0.1686, 0.8588];
                        gumball_color = [(- 0.2157), 0.1686, 0.8588];
                        choice_outcome = "A blue gumball";
                        gumball_text = "was drawn and the outcome was";
                        money_outcome = ("$" + money.toString());
                    } else {
                        if (((outcome === 0) && (domain === "gain"))) {
                            outcome_color = [(- 0.2157), 0.1686, 0.8588];
                            gumball_color = [(- 0.2157), 0.1686, 0.8588];
                            choice_outcome = "A blue gumball";
                            gumball_text = "was drawn and the outcome was";
                            money_outcome = ("$" + money.toString());
                        } else {
                            if (((outcome === 0) && (domain === "loss"))) {
                                outcome_color = [0.9608, 0.0039, (- 0.1059)];
                                gumball_color = [0.9608, 0.0039, (- 0.1059)];
                                choice_outcome = "A red gumball";
                                gumball_text = "was drawn and the outcome was";
                                money_outcome = ("$" + money.toString());
                            }
                        }
                    }
                }
            } else {
                if (((outcome === 1) && (domain === "gain"))) {
                    outcome_color = [(- 0.2157), 0.1686, 0.8588];
                    gumball_color = [(- 0.2157), 0.1686, 0.8588];
                    choice_outcome = "A blue gumball";
                    gumball_text = "was drawn and the outcome was";
                    money_outcome = ("$" + money.toString());
                } else {
                    if (((outcome === 1) && (domain === "loss"))) {
                        outcome_color = [0.9608, 0.0039, (- 0.1059)];
                        gumball_color = [0.9608, 0.0039, (- 0.1059)];
                        choice_outcome = "A red gumball";
                        gumball_text = "was drawn and the outcome was";
                        money_outcome = ("$" + money.toString());
                    } else {
                        if (((outcome === 0) && (domain === "gain"))) {
                            outcome_color = [0.9608, 0.0039, (- 0.1059)];
                            gumball_color = [0.9608, 0.0039, (- 0.1059)];
                            choice_outcome = "A red gumball";
                            gumball_text = "was drawn and the outcome was";
                            money_outcome = ("$" + money.toString());
                        } else {
                            if (((outcome === 0) && (domain === "loss"))) {
                                outcome_color = [(- 0.2157), 0.1686, 0.8588];
                                gumball_color = [(- 0.2157), 0.1686, 0.8588];
                                choice_outcome = "A blue gumball";
                                gumball_text = "was drawn and the outcome was";
                                money_outcome = ("$" + money.toString());
                            }
                        }
                    }
                }
            }
        }
    ImageComponent crdm_bonus_img
      image [set every repeat] = $choice_img
      pos = (0.5, 0)
      saveStartStop = False
      size = (0.3, 0.6)
      startVal [time (s)] = 0.0
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    TextComponent crdm_bonus_thanks_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.06
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = ** The Lottery Game Bonus Trial ** 
      wrapWidth = 1.35
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    TextComponent crdm_bonus_lott_left_txt
      color [set every repeat] = $left_color
      letterHeight = 0.04
      pos = (0.435, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $str("$"+str(left))
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    TextComponent crdm_bonus_sure_center_txt
      color [set every repeat] = $sure_color
      letterHeight = 0.04
      pos = (0.5, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $str("$"+str(sure_amt))
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    TextComponent crdm_bonus_lott_right_txt
      color [set every repeat] = $right_color
      letterHeight = 0.04
      pos = (0.565, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $str("$"+str(right))
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    TextComponent crdm_bonus_prompt_txt
      letterHeight = 0.04
      pos = (-0.2, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = In this trial, you chose:
      wrapWidth = 1
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    TextComponent crdm_bonus_choice_text_txt
      letterHeight = 0.05
      pos = (-0.2, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $choice_text
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    TextComponent crdm_bonus_choice_outcome_txt
      color [set every repeat] = $outcome_color
      letterHeight = 0.06
      pos = (-0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $choice_outcome
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    TextComponent crdm_bonus_drawn_txt
      letterHeight = 0.04
      pos = (-0.2, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $gumball_text
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    PolygonComponent crdm_bonus_gumball_poly
      fillColor [set every repeat] = $gumball_color
      lineColor [set every repeat] = $gumball_color
      pos = (0.05, 0)
      saveStartStop = False
      shape = circle
      size = (0.075, 0.075)
      startVal [time (s)] = 0.0
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    TextComponent crdm_bonus_winnings_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.08
      pos = (-0.2, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $money_outcome
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    TextComponent crdm_bonus_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to end.
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    KeyboardComponent crdm_bonus_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_instr1
    RoutineSettingsComponent crdm_instr1
      saveStartStop = False
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    CodeComponent crdm_instr1_JS
      Code Type = JS
      Begin JS Experiment:
        //function for random.random used in python
        random = {
        random: function(){return Math.random()},
        randint: function(start, end){return Math.round(Math.random() * (end - start) + start)},
        choices: function(items, weights){
            var i;
            for (i = 0; i < weights.length; i++)
                weights[i] += weights[i - 1] || 0;
            var random = Math.random() * weights[weights.length - 1];
            for (i = 0; i < weights.length; i++)
                if (weights[i] > random)
                    break;
            return items[i] }
        }

        earnings = []
    CodeComponent crdm_instr1_py
      Code Type = Py
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      Before Experiment:
        ###code written by Mandy Renfro (2023)###
        import random
      Begin Experiment:
        earnings = []
      Begin Routine:
        #provides specific loop names for each of two interations of CRDM
        #to provide flexibility of crdm_pract_trial and crdm_trial routines
        practice_loop_name = "crdm_pract_trials"
        loop_name = "crdm_trials"
    TextComponent crdm_instr1_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * The Lottery Game *
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    TextComponent crdm_instr1_txt
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        In this game, you will make choices between:


        - Gaining/losing a certain amount
        OR
        - Playing a lottery for the chance to win a larger gain or smaller loss
    TextComponent crdm_instr1_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_instrV_2
    RoutineSettingsComponent crdm_instrV_2
      saveStartStop = False
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    MovieComponent crdm_instrV_mov
      backend = moviepy
      forceEndRoutine = False
      movie [set every repeat] = images/crdm_instrV5.mp4
      saveStartStop = False
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 613
      units = norm
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    KeyboardComponent crdm_instrV_resp
      allowedKeys = 'x'
      disabled = True
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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Flow
  Routine crdm_instr1
  Routine crdm_instrV_2
  Routine crdm_pract_instr
  LoopInitiator crdm_pract_trials loopType="TrialHandler"
    conditionsFile = crdm_child_practice.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('crdm_sure_amt', 5), ('crdm_sure_p', 100), ('crdm_lott_left', 0), ('crdm_lott_right', 10), ('crdm_lott_p', 25), ('crdm_amb_lev', 0), ('crdm_domain', 'gain'), ('crdm_img', 'machine_b6_r2.png'), ('crdm_nonzero_side', 'right'), ('crdm_winning_color', 'red')]),
      OrderedDict([('crdm_sure_amt', 5), ('crdm_sure_p', 100), ('crdm_lott_left', 15), ('crdm_lott_right', 0), ('crdm_lott_p', 25), ('crdm_amb_lev', 0), ('crdm_domain', 'gain'), ('crdm_img', 'machine_b2_r6.png'), ('crdm_nonzero_side', 'left'), ('crdm_winning_color', 'blue')]),
      OrderedDict([('crdm_sure_amt', 5), ('crdm_sure_p', 100), ('crdm_lott_left', 0), ('crdm_lott_right', 20), ('crdm_lott_p', 25), ('crdm_amb_lev', 0), ('crdm_domain', 'gain'), ('crdm_img', 'machine_b6_r2.png'), ('crdm_nonzero_side', 'right'), ('crdm_winning_color', 'red')]),
      OrderedDict([('crdm_sure_amt', -5), ('crdm_sure_p', 100), ('crdm_lott_left', -5), ('crdm_lott_right', 0), ('crdm_lott_p', 25), ('crdm_amb_lev', 0), ('crdm_domain', 'loss'), ('crdm_img', 'machine_b2_r6.png'), ('crdm_nonzero_side', 'left'), ('crdm_winning_color', 'red')]),
      OrderedDict([('crdm_sure_amt', -5), ('crdm_sure_p', 100), ('crdm_lott_left', 0), ('crdm_lott_right', -10), ('crdm_lott_p', 25), ('crdm_amb_lev', 0), ('crdm_domain', 'loss'), ('crdm_img', 'machine_b6_r2.png'), ('crdm_nonzero_side', 'right'), ('crdm_winning_color', 'blue')])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
    Routine crdm_pract_trial
    Routine crdm_pract_feedback
    Routine crdm_pract_conf
    Routine crdm_pract_iti
  LoopTerminator crdm_pract_trials
  Routine crdm_trial_instr
  Routine crdm_init_fix
  LoopInitiator crdm_trials loopType="TrialHandler"
    conditionsFile = crdm_child_trials.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('crdm_sure_amt', 5), ('crdm_sure_p', 100), ('crdm_lott_left', 5), ('crdm_lott_right', 0), ('crdm_lott_p', 25), ('crdm_amb_lev', 0), ('crdm_domain', 'gain'), ('crdm_img', 'machine_b2_r6.png'), ('crdm_nonzero_side', 'left'), ('crdm_winning_color', 'blue')]),
      OrderedDict([('crdm_sure_amt', 5), ('crdm_sure_p', 100), ('crdm_lott_left', 0), ('crdm_lott_right', 10), ('crdm_lott_p', 25), ('crdm_amb_lev', 0), ('crdm_domain', 'gain'), ('crdm_img', 'machine_b6_r2.png'), ('crdm_nonzero_side', 'right'), ('crdm_winning_color', 'red')]),
      OrderedDict([('crdm_sure_amt', 5), ('crdm_sure_p', 100), ('crdm_lott_left', 15), ('crdm_lott_right', 0), ('crdm_lott_p', 25), ('crdm_amb_lev', 0), ('crdm_domain', 'gain'), ('crdm_img', 'machine_b2_r6.png'), ('crdm_nonzero_side', 'left'), ('crdm_winning_color', 'blue')]),
      OrderedDict([('crdm_sure_amt', 5), ('crdm_sure_p', 100), ('crdm_lott_left', 0), ('crdm_lott_right', 20), ('crdm_lott_p', 25), ('crdm_amb_lev', 0), ('crdm_domain', 'gain'), ('crdm_img', 'machine_b6_r2.png'), ('crdm_nonzero_side', 'right'), ('crdm_winning_color', 'red')]),
      OrderedDict([('crdm_sure_amt', 5), ('crdm_sure_p', 100), ('crdm_lott_left', 25), ('crdm_lott_right', 0), ('crdm_lott_p', 25), ('crdm_amb_lev', 0), ('crdm_domain', 'gain'), ('crdm_img', 'machine_b2_r6.png'), ('crdm_nonzero_side', 'left'), ('crdm_winning_color', 'blue')])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
    Routine crdm_trial
    Routine crdm_feedback
    Routine crdm_conf
    Routine crdm_trial_iti
  LoopTerminator crdm_trials
  Routine crdm_bonus
