PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Data filename = u'../../../datasets/SDDM/CDD/24-%s/%s_%s' % (expInfo['participant'], expInfo['participant'], expInfo['session'])
  Experiment info = {'participant': 'CDD', 'session': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Use version = 2023.2.2
  Window size (pixels) = [2560, 1440]
  expName = CDD
  keyboardBackend = Pyglet
  runMode = 1
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Routines
  Routine BPET_setup
    RoutineSettingsComponent BPET_setup
      saveStartStop = False
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    CodeComponent BP_start
      Code Type = Py
      Begin Experiment:
        import serial
        ser = serial.Serial("COM5", 115200, timeout=1) #define serial port (always same)
        ser.write("RR".encode()) #clear serial port
        ser.write("02".encode()) #begin BIOPAC recording at start of experiment
    CodeComponent ET_start
      Code Type = Py
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      Before Experiment:
        import os
        import platform
        import pylink
        import random
        import sys
        import time
        import numpy as np
        from numpy import (sin, cos, tan, log, log10, pi, average,
                           sqrt, std, deg2rad, rad2deg, linspace, asarray)
        #from numpy.random import random, randint, normal, shuffle, choice as randchoice
        from psychopy import locale_setup
        from psychopy import prefs
        from psychopy import clock, colors, core, data, event, gui, layout, logging, monitors, sound, visual
        from psychopy.constants import (NOT_STARTED, STARTED, PLAYING, PAUSED,
                                        STOPPED, FINISHED, PRESSED, RELEASED, FOREVER)
        from psychopy.hardware import keyboard
        from EyeLinkCoreGraphicsPsychoPy import EyeLinkCoreGraphicsPsychoPy
        from PIL import Image  # for preparing Host backdrop image
        from string import ascii_letters, digits

        # Set to True to run task in full screen mode
        # Easier to debug script in non-full screen mode
        full_screen = True
      Begin Experiment:
        class WrapTest(object):
            def __init__(self, el_tracker):
                self.msg = False
                self.el_tracker = el_tracker

            def eyetrack_flip(self, func):
                def wrap():
                    func()
                    if self.msg:
                        self.el_tracker.sendMessage('image_onset')
                        self.msg = False
                return wrap

        # Set up EDF data file name and local data folder
        #
        # EDF data filename should not exceed 8 alphanumeric characters
        # Use ONLY number 0-9, letters, & _ (underscore) in filename
        edf_fname = '{0}'.format(expInfo["participant"])

        # Prompt user to specify an EDF data filename
        # before opening fullscreen window
        dlg_title = 'Enter EDF File Name'
        dlg_prompt = 'Please enter a file name with 8 or fewer characters\n' + \
                     '[letters, numbers, and underscore].'

        # Loop until a valid filename
        while True:
            dlg = gui.Dlg(dlg_title)
            dlg.addText(dlg_prompt)
            dlg.addField('File Name:', edf_fname)
            # show dialog and wait for OK or Cancel
            ok_data = dlg.show()
            if dlg.OK:  # if ok_data is not None
                print('EDF data filename: {}'.format(ok_data[0]))
            else:
                print('user cancelled')
                core.quit()
                sys.exit()

            # get string entered by experimenter
            tmp_str = dlg.data[0]
            # strip trailing characters, ignore ".edf" extension
            edf_fname = tmp_str.rstrip().split('.')[0]

            # check if filename is valid (length <= 8 & no special char)
            allowed_char = ascii_letters + digits + '_'
            if not all([c in allowed_char for c in edf_fname]):
                print('ERROR: Invalid EDF filename')
            elif len(edf_fname) > 8:
                print('ERROR: EDF filename should not exceed 8 characters')
            else:
                break

        # Set up folder to store EDF data files and associated resources
        results_folder = 'results'
        if not os.path.exists(results_folder):
            os.makedirs(results_folder)

        # Download EDF data file from EyeLink Host PC to local hard
        # drive at end of each testing session, rename EDF to
        # include session start date/time
        time_str = time.strftime("_%Y_%m_%d_%H_%M", time.localtime())
        session_identifier = edf_fname + time_str

        # Create a folder for current testing session in "results" folder
        session_folder = os.path.join(results_folder, session_identifier)
        if not os.path.exists(session_folder):
            os.makedirs(session_folder)

        ## Step 1: Connect to EyeLink Host PC ----------------------------
        #
        # The Host IP address, by default, is "100.1.1.1".
        # "el_tracker" object created can be accessed through Pylink
        # Set Host PC address to "None" (without quotes) to run script in "Dummy Mode"
        el_tracker = pylink.EyeLink("100.1.1.1")
        wrapper = WrapTest(el_tracker)
        win.flip = wrapper.eyetrack_flip(win.flip)

        ## Step 2: Open an EDF data file on Host PC ----------------------------
        edf_file = edf_fname + ".EDF"
        try:
            el_tracker.openDataFile(edf_file)
        except RuntimeError as err:
            print('ERROR:', err)
            # close link if one is open
            if el_tracker.isConnected():
                el_tracker.close()
            core.quit()
            sys.exit()

        # Add header text to EDF file to identify current experiment name
        # This is OPTIONAL. If your text starts with "RECORDED BY " it will be
        # available in DataViewer's Inspector window by clicking
        # EDF session node in the top panel and looking for "Recorded By:"
        # field in the bottom panel of Inspector.
        preamble_text = 'RECORDED BY %s' % os.path.basename(__file__)
        el_tracker.sendCommand("add_file_preamble_text '%s'" % preamble_text)


        ## Step 3: Configure eye-tracker ----------------------------
        #
        # Put eye-tracker in offline mode before changing tracking parameters
        el_tracker.setOfflineMode()

        # Get software version:  1-EyeLink I, 2-EyeLink II, 3/4-EyeLink 1000,
        # 5-EyeLink 1000 Plus, 6-Portable DUO
        eyelink_ver = 6  # set version to 0, in case running in Dummy mode
        vstr = el_tracker.getTrackerVersionString()
        eyelink_ver = int(vstr.split()[-1].split('.')[0])
        # print out version info in shell
        print('Running experiment on %s, version %d' % (vstr, eyelink_ver))

        # File and Link data control
        # Eye events to save in EDF file, include everything by default
        file_event_flags = 'LEFT,RIGHT,FIXATION,SACCADE,BLINK,MESSAGE,BUTTON,INPUT'
        # Eye events to make available over link, include everything by default
        link_event_flags = 'LEFT,RIGHT,FIXATION,SACCADE,BLINK,BUTTON,FIXUPDATE,INPUT'
        # Sample data to save in EDF data file and to make available
        # over link, include 'HTARGET' flag to save head target sticker
        # data for supported eye trackers
        if eyelink_ver > 3:
            file_sample_flags = 'LEFT,RIGHT,GAZE,HREF,RAW,AREA,HTARGET,GAZERES,BUTTON,STATUS,INPUT'
            link_sample_flags = 'LEFT,RIGHT,GAZE,GAZERES,AREA,HTARGET,STATUS,INPUT'
        else:
            file_sample_flags = 'LEFT,RIGHT,GAZE,HREF,RAW,AREA,GAZERES,BUTTON,STATUS,INPUT'
            link_sample_flags = 'LEFT,RIGHT,GAZE,GAZERES,AREA,STATUS,INPUT'
        el_tracker.sendCommand("file_event_filter = %s" % file_event_flags)
        el_tracker.sendCommand("file_sample_data = %s" % file_sample_flags)
        el_tracker.sendCommand("link_event_filter = %s" % link_event_flags)
        el_tracker.sendCommand("link_sample_data = %s" % link_sample_flags)

        # Choose calibration type: H3, HV3, HV5, HV13 (HV = horizontal/vertical),
        el_tracker.sendCommand("calibration_type = HV9")
        # Set a gamepad button to accept calibration/drift check target
        # Needs a supported gamepad/button box connected to Host PC
        el_tracker.sendCommand("button_function 5 'accept_target_fixation'")
        ##when running, if issues with win, move to Begin Routine
        # Get native screen resolution used by PsychoPy
        scn_width, scn_height = win.size

        # Pass display pixel coordinates (left, top, right, bottom) to eye-tracker
        # see EyeLink Installation Guide, "Customizing Screen Settings"
        el_coords = "screen_pixel_coords = 0 0 %d %d" % (scn_width - 1, scn_height - 1)
        el_tracker.sendCommand(el_coords)

        # Write DISPLAY_COORDS message to EDF file
        # Data Viewer needs this info for proper visualization, see Data
        # Viewer User Manual, "Protocol for EyeLink Data to Viewer Integration"
        dv_coords = "DISPLAY_COORDS  0 0 %d %d" % (scn_width - 1, scn_height - 1)
        el_tracker.sendMessage(dv_coords)
      Begin Routine:
        ## Configure graphics environment (genv) for tracker calibration
        genv = EyeLinkCoreGraphicsPsychoPy(el_tracker, win)
        #print(genv)  # print out version number of CoreGraphics library
        # Set background and foreground colors for calibration target
        # in PsychoPy, (-1, -1, -1)=black, (1, 1, 1)=white, (0, 0, 0)=mid-gray
        foreground_color = (-1, -1, -1)
        background_color = win.color
        genv.setCalibrationColors(foreground_color, background_color)

        ## Set up calibration target
        #
        # Target could be a "circle" (default), "picture", "movie" clip,
        # or rotating "spiral". To configure type of calibration target, set
        # genv.setTargetType to "circle", "picture", "movie", or "spiral",
        #  e.g., genv.setTargetType('picture')
        #
        # Use gen.setPictureTarget() to set "picture" target
        # genv.setPictureTarget(os.path.join('images', 'fixTarget.bmp'))
        #
        # Use genv.setMovieTarget() to set "movie" target
        # genv.setMovieTarget(os.path.join('videos', 'calibVid.mov'))

        # Use picture as calibration target
        genv.setTargetType('picture')
        genv.setPictureTarget(os.path.join('images', 'fixTarget.bmp'))

        # Configure the size of the calibration target (in pixels)
        # this option applies only to "circle" and "spiral" targets
        # genv.setTargetSize(24)

        # Beeps to play during calibration, validation and drift correction
        # parameters: target, good, error
        #     target -- sound to play when target moves
        #     good -- sound to play on successful operation
        #     error -- sound to play on failure or interruption
        # Each parameter could be ''--default sound, 'off'--no sound, or a wav file
        genv.setCalibrationSounds('', '', '')

        # Request Pylink to use PsychoPy window opened above for calibration
        pylink.openGraphicsEx(genv)

        ## Helper functions for trial handling

        def show_msg(win, text, wait_for_keypress=True):
            """ Show task instructions on screen"""
            msg = visual.TextStim(win, text,
                                  color=genv.getForegroundColor(),
                                  wrapWidth=scn_width/2)
            msg.draw()
            win.flip()
            # wait indefinitely, terminates upon any key press
            if wait_for_keypress:
                event.waitKeys()
                #clear_screen(win)

        def retrieve_data():
            """ Retrieves EDF data file from Host PC
            file_to_retrieve: EDF on Host to download
            win: current window used by experimental script
            """
            el_tracker = pylink.getEYELINK()
            if el_tracker.isConnected():
                # Terminate current trial first if task terminated prematurely
                error = el_tracker.isRecording()
                if error == pylink.TRIAL_OK:
                    abort_trial()
                # Put tracker in Offline mode
                el_tracker.setOfflineMode()
                # Clear Host PC screen and wait for 500 ms
                el_tracker.sendCommand('clear_screen 0')
                pylink.msecDelay(500)
                # Close EDF data file on Host
                el_tracker.closeDataFile()
                # Show file transfer message onscreen
                msg = 'Transferring data...'
                show_msg(win, msg, wait_for_keypress=False)
                # Download EDF data file from Host PC to local data folder
                # Parameters: source_file_on_the_host, destination_file_on_local_drive
                local_edf = os.path.join(session_folder, session_identifier + '.EDF')
                try:
                    el_tracker.receiveDataFile(edf_file, local_edf)
                except RuntimeError as error:
                    print('ERROR:', error)
                # Close link to eye-tracker.
                el_tracker.close()


        def abort_trial():
            """Ends recording """
            el_tracker = pylink.getEYELINK()
            # Stop recording
            if el_tracker.isRecording():
                # add 100 ms to catch final trial events
                pylink.pumpDelay(100)
                el_tracker.stopRecording()
            # Send message to clear Data Viewer screen
            bgcolor_RGB = (116, 116, 116)
            el_tracker.sendMessage('!V CLEAR %d %d %d' % bgcolor_RGB)
            # Send message to mark trial end
            el_tracker.sendMessage('TRIAL_RESULT %d' % pylink.TRIAL_ERROR)

            return pylink.TRIAL_ERROR

        ## Step 5: Set up camera and calibrate eye-tracker ----------------------------

        # Show task instructions
        task_msg = 'Press Ctrl-C to if you need to quit the task early\n'
        task_msg = task_msg + '\nPress ENTER twice to calibrate tracker'
        show_msg(win, task_msg)

        try:
            el_tracker.doTrackerSetup()
        except RuntimeError as err:
            print("Error", err)
            el_tracker.exitCalibration()
  Routine cdd_instr1
    RoutineSettingsComponent cdd_instr1
      saveStartStop = False
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    CodeComponent cdd_namer_code
      Code Type = Py
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      Before Experiment:
        import random
        exp_proceed = True
        earnings = []
        conf_resps = []

        confkey_map = {"2": "1", "3": "2", "j": "3", "k": "4", None: None} #for Cedrus box code mapping
      Begin Routine:
        #provides specific loop names for each of two interations of DD
        #to provide flexibility of cdd_pract_trial and cdd_trial routines
        practice_loop_name = "cdd_pract_trials"
        loop_name = "cdd_trials"
    TextComponent cdd_instr1_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Delay Discounting Task *
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    TextComponent cdd_instr1_txt
      letterHeight = 0.03
      pos = (0, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        In this decision making task, you will be asked indicate your preference between:

        - An amount of money you could receive today
        OR
        - An amount of money you could receive in the future

        The value of each option and the length of delay will change across trials. One of your choices in this section may be randomly selected as your *bonus earnings trial* at the end of the experiment.

        Example:
        - If you chose \$25 dollars immediately, you would receive \$25 today.
        - If you chose \$50 in 15 days, you would receive \$50 in 15 days.
    TextComponent cdd_instr1_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent cdd_instr1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cdd_warn
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    UnknownComponent cdd_warn_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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    TextComponent cdd_warn1_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Delay Discounting Task *
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    TextComponent cdd_warn1_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        IMPORTANT: You must answer both the choice and confidence prompts to complete each trial. The experiment will end if you (1) miss more than 5% of trials, or (2) provide responses which indicate you did not understand, or are not following, task instructions. If this happens, you will not be eligible to receive payment or a bonus.

        Please remain engaged throughout the experiment and provide earnest, sincere responses for each trial. Thank you for your participation!
    TextComponent cdd_warn1_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent cdd_warn1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cdd_pract_instr
    RoutineSettingsComponent cdd_pract_instr
      saveStartStop = False
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    PolygonComponent cdd_pract_instr_left_poly
      fillColor = 0, 0, 0
      lineWidth = 10
      pos = (-0.5, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    PolygonComponent cdd_pract_instr_right_poly
      fillColor = 0, 0, 0
      lineWidth = 10
      pos = (0.5, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent cdd_pract_instr_txt
      letterHeight = 0.05
      pos = (0, 0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        *EXAMPLE TRIAL*

        Which would you prefer?








        Let's practice!
    TextComponent cdd_pract_instr_immed_txt
      letterHeight = 0.04
      pos = (0.5, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        \$10

        TODAY
    TextComponent cdd_pract_instr_delay_txt
      letterHeight = 0.04
      pos = (-0.5, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        \$50

        9 DAYS
    TextComponent cdd_pract_instr_or_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = OR
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    TextComponent cdd_pract_instr_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent cdd_pract_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cdd_init_fix
    RoutineSettingsComponent cdd_init_fix
      saveStartStop = False
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    PolygonComponent cdd_init_fix_polygon
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine cdd_pract_trial
    RoutineSettingsComponent cdd_pract_trial
      saveStartStop = False
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    CodeComponent cdd_pract_trial_code
      Code Type = Py
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      Begin Experiment:
        immed_pos = [] #position of immediate amt option
        immed_resp = [] #which key is immediate amt option
        cdd_msg = ""

        #stimuli positions and respective responses
        pos = [[-0.5, 0], [0.5, 0]] #left/right screen locations
        resp = ["4", "5"] #4 = left, 5 = right
      Begin Routine:
        my_loop = eval(practice_loop_name)
        idx = random.randint(0,1) #random selection of position and resp key

        immed_pos = pos[idx]
        immed_resp = resp[idx]

        if idx == 0: #immed is left side
            delay_pos = pos[1] #delay is right
        else: #immed is right side
            delay_pos = pos[0] #delay is left
      End Routine:
        pract_key = cdd_pract_trial_resp.keys #Ss response key
        pract_immed_key = cdd_pract_trial_resp.corr #1 when immediate amt is chosen
        my_loop.addData("cdd_trial_type", "practice")
    PolygonComponent cdd_pract_trial_left_poly
      fillColor = 0,0,0
      lineWidth = 10
      pos = (-0.5, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    PolygonComponent cdd_pract_trial_right_poly
      fillColor = 0,0,0
      lineWidth = 10
      pos = (0.5, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent cdd_pract_trial_prompt_txt
      letterHeight = 0.06
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Which would you prefer?
      wrapWidth = 1.25
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    TextComponent cdd_pract_trial_immed_txt
      letterHeight = 0.04
      pos [set every repeat] = immed_pos
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $str("$"+str(cdd_immed_amt)) + "\n" + "\n" + " TODAY"
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    TextComponent cdd_pract_trial_or_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = OR
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    TextComponent cdd_pract_trial_delay_txt
      letterHeight = 0.04
      pos [set every repeat] = delay_pos
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $str("$"+str(cdd_delay_amt)) + "\n" + "\n" + str(cdd_delay_wait) + " DAYS"
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    PolygonComponent GRFX_fix
      fillColor = [0,0,0]
      lineColor = [0,0,0]
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
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    PolygonComponent cdd_pract_trial_cue
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, 1.0000, -1.0000
      saveStartStop = False
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
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    KeyboardComponent cdd_pract_trial_resp
      allowedKeys = '4', '5'
      correctAns = $immed_resp
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine cdd_feedback
    RoutineSettingsComponent cdd_feedback
      saveStartStop = False
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    CodeComponent cdd_feedback_code
      Code Type = Py
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      Begin Routine:
        if len(key) == 0: #Ss did not respond
            #cdd_msg = "NO RESPONSE"
            feedback_img = "images/FB_nonresp.png"
        elif immed_key: #Ss chose smaller, immediate option
            #cdd_msg = "$ NOW"
            feedback_img = "images/FB_now.png"
        else: #Ss chose larger, delayed option
            #cdd_msg = "$ LATER"
            feedback_img = "images/FB_later.png"
    CodeComponent BP_feedback_trig
      Code Type = Py
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      Begin Routine:
        ser.write("40".encode()) #feedback marker
        ser.flush()
    ImageComponent cdd_FB_img
      image [set every repeat] = $feedback_img
      saveStartStop = False
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent cdd_feedback_txt
      disabled = True
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $cdd_msg
      wrapWidth = 1.25
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  Routine cdd_conf
    RoutineSettingsComponent cdd_conf
      saveStartStop = False
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    CodeComponent cdd_conf_py
      Code Type = Py
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      Begin Routine:
        #Ss did not respond to choice trial
        if len(key) == 0:
            continueRoutine = False

        #set all 4 boxes as gray by default
        conf1_color = [0, 0, 0]
        conf2_color = [0, 0, 0]
        conf3_color = [0, 0, 0]
        conf4_color = [0, 0, 0]
      Each Frame:
        conf_key = cdd_conf_resp.keys
        #confidence rating received
        if len(conf_key) == 1:
            conf_key = confkey_map[conf_key[-1]]
            #not at all confident
            if conf_key == "1":
                conf1_color = "darkgray"
                conf2_color = [0, 0, 0]
                conf3_color = [0, 0, 0]
                conf4_color = [0, 0, 0]
            #less confident
            elif conf_key == "2":
                conf1_color = [0, 0, 0]
                conf2_color = "darkgray"
                conf3_color = [0, 0, 0]
                conf4_color = [0, 0, 0]
            #somewhat confident
            elif conf_key == "3":
                conf1_color = [0, 0, 0]
                conf2_color = [0, 0, 0]
                conf3_color = "darkgray"
                conf4_color = [0, 0, 0]
            #very confident
            elif conf_key == "4":
                conf1_color = [0, 0, 0]
                conf2_color = [0, 0, 0]
                conf3_color = [0, 0, 0]
                conf4_color = "darkgray"
      End Routine:
        my_loop.addData("cdd_conf", conf_key)

        if len(conf_key) == 1:
            if type(conf_key) == list:
                if conf_key[-1] in ["1", "2", "3", "4"]:
                    conf_resps.append(conf_key)
            else:
                if conf_key in ["1", "2", "3", "4"]:
                    conf_resps.append(conf_key)
    CodeComponent BP_conf_trig
      Code Type = Py
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      Begin Routine:
        ser.write("80".encode()) #confidence trial marker
        ser.flush()
      End Routine:
        ser.write("00".encode()) #clear all channels
    TextComponent cdd_conf_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = How confident are you in your choice?
      wrapWidth = 1.25
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    PolygonComponent cdd_conf1
      fillColor [set every frame] = $conf1_color
      lineWidth = 10
      pos = (-0.6, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent cdd_conf1_txt
      letterHeight = 0.04
      pos = (-0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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      text:
        Not at all
        confident

        1
    PolygonComponent cdd_conf2
      fillColor [set every frame] = $conf2_color
      lineWidth = 10
      pos = (-0.2, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent cdd_conf2_txt
      letterHeight = 0.04
      pos = (-0.2, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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      text:
        Less
        confident

        2
    PolygonComponent cdd_conf3
      fillColor [set every frame] = $conf3_color
      lineWidth = 10
      pos = (0.2, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent cdd_conf3_txt
      letterHeight = 0.04
      pos = (0.2, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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      text:
        Somewhat
        confident

        3
    PolygonComponent cdd_conf4
      fillColor [set every frame] = $conf4_color
      lineWidth = 10
      pos = (0.6, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent cdd_conf4_txt
      letterHeight = 0.04
      pos = (0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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      text:
        Very
        confident

        4
    KeyboardComponent cdd_conf_resp
      allowedKeys = '2', '3', 'j', 'k'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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  Routine cdd_trial_instr
    RoutineSettingsComponent cdd_trial_instr
      saveStartStop = False
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    CodeComponent cdd_trial_instr_code
      Code Type = Py
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      Begin Routine:
        #QC check
        task_resps = []
        conf_resps = []
        catch_trials = []

        #variable ITI list creation
        iti_list = [random.random() for i in range(96)]
        s = sum(iti_list)
        iti_list = [i*96/s for i in iti_list]
    TextComponent cdd_trial_instr_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Delay Discounting Task *
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    TextComponent cdd_trial_instr_txt
      letterHeight = 0.03
      pos = (0, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        Now that you have practiced, the actual task will begin.

        Remember to make your choice between the immediate and delayed amounts when you see the green circle. You will have 4 seconds to consider both options and 2 seconds to make your choice. After each choice, you will be given 2 seconds to rate your choice confidence.

        When a white cross appears, please focus your attention on the center of the screen.
    TextComponent cdd_trial_instr_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent cdd_trial_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cdd_trial
    RoutineSettingsComponent cdd_trial
      saveStartStop = False
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    CodeComponent cdd_trial_code
      Code Type = Py
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      Begin Experiment:
        delta_time = 0

        immed_pos = [] #position of immediate reward option
        immed_resp = [] #button for immediate reward option
        cdd_msg = ""

        pos = [[-0.5, 0], [0.5, 0]] #left/right screen positions
        resp = ["4", "5"] #4 = left, 5 = right
      Begin Routine:
        my_loop = eval(loop_name)
        stop_timer = None
        stopped_time = 0
        conf_key = []

        idx = random.randint(0,1) #random integer to determine side of immediate option
        immed_pos = pos[idx]
        immed_resp = resp[idx]

        #immed position is left, delay is right
        if idx == 0:
            delay_pos = pos[1]
        else:
            delay_pos = pos[0]
      Each Frame:
        #Ss responded
        if len(cdd_trial_resp.keys) == 1:
            if stop_timer == None:
                stop_timer = core.Clock()
            else:
                stopped_time = stop_timer.getTime()
                if stopped_time >= 0.5:
                    continueRoutine = False
      End Routine:
        key = cdd_trial_resp.keys #Ss response key
        immed_key = cdd_trial_resp.corr #1 if immed option chosen
        my_loop.addData("cdd_trial_type", "task")

        if type(cdd_trial_resp.rt) is list or cdd_trial_resp.rt >= 2 - 0.5:
            delta_time = 0
        else: #Ss responded and not near end of resp window
            delta_time = max(0, 2 - (cdd_trial_resp.rt + stopped_time))

        if len(key) == 1: #Ss responded
            if immed_key == 1: #Ss chose immed
                my_loop.addData("cdd_choice", 0)
                my_loop.addData("cdd_choice2", "immed")
                earnings.append(("CDD", "immed", cdd_immed_amt, cdd_immed_wait, cdd_delay_amt, cdd_delay_wait))
            else: #Ss chose delay
                my_loop.addData("cdd_choice", 1)
                my_loop.addData("cdd_choice2", "delay")
                earnings.append(("CDD", "delay", cdd_immed_amt, cdd_immed_wait, cdd_delay_amt, cdd_delay_wait))
    CodeComponent BP_trial_trig
      Code Type = Py
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      Begin Routine:
        ser.write("20".encode()) #task trial marker
        ser.flush()
    CodeComponent ET_record
      Code Type = Py
      Begin Experiment:
        et_trial_ct = 0 #trial count for eye tracker display/recording
      Begin Routine:
        et_trial_ct += 1

        # Get reference to currently active EyeLink connection
        el_tracker = pylink.getEYELINK()
        wrapper.el_tracker = el_tracker
        wrapper.msg = True

        # Put tracker in offline mode first
        el_tracker.setOfflineMode()

        # Clear host screen before drawing backdrop
        #el_tracker.sendCommand('clear_screen 0')

        '''
        # Use the code commented below to convert the image and send the backdrop
        im = Image.open('cpdm_screen.png')  # read image with PIL
        im = im.resize((scn_width, scn_height))
        img_pixels = im.load()  # access the pixel data of the image
        pixels = [[img_pixels[i, j] for i in range(scn_width)]
                  for j in range(scn_height)]
        el_tracker.bitmapBackdrop(scn_width, scn_height, pixels,
                                  0, 0, scn_width, scn_height,
                                  0, 0, pylink.BX_MAXCONTRAST)
        '''
        # Record_status_message : show some info on Host PC
        # Here we show how many trials have been tested
        status_msg = 'TRIAL NO. %d' % et_trial_ct
        el_tracker.sendCommand("record_status_message '%s'" % status_msg)

        # Send a "TRIALID" message to mark start of trial, see Data
        # Viewer User Manual, "Protocol for EyeLink Data to Viewer Integration"
        el_tracker.sendMessage('TRIALID %d' % et_trial_ct)
        trl_onset_time = core.getTime()  #get trial onset time
        el_tracker.sendMessage('!V TRIAL_VAR trial_onset %s' % trl_onset_time) # record trial onset

        # Start recording
        # arguments: sample_to_file, events_to_file, sample_over_link, event_over_link (1-yes, 0-no)
        el_tracker.startRecording(1, 1, 1, 1)

        # Allocate time for eye-tracker to cache samples
        pylink.pumpDelay(100)
      End Routine:
        el_tracker.sendMessage('!V TRIAL_VAR resp_key %s' % cdd_trial_resp.keys) # record trial response

        el_tracker.sendMessage('END_TRIAL')
        # Stop recording; add 100 msec to catch final events before stopping
        pylink.pumpDelay(100)
        el_tracker.stopRecording()

        # Send a 'TRIAL_RESULT' message to mark end of trial, see Data
        # Viewer User Manual, "Protocol for EyeLink Data to Viewer Integration"
        el_tracker.sendMessage('TRIAL_RESULT %d' % pylink.TRIAL_OK)
    PolygonComponent cdd_trial_left_poly
      fillColor = 0,0,0
      lineWidth = 10
      pos = (-0.5, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    PolygonComponent cdd_trial_right_poly
      fillColor = 0,0,0
      lineWidth = 10
      pos = (0.5, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent cdd_trial_prompt_txt
      letterHeight = 0.06
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Which would you prefer?
      wrapWidth = 1.25
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    TextComponent cdd_trial_immed_txt
      letterHeight = 0.04
      pos [set every repeat] = immed_pos
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $str("$"+str(cdd_immed_amt)) + "\n" + "\n" + " TODAY"
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    TextComponent cdd_trial_or_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = OR
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    TextComponent cdd_trial_delay_txt
      letterHeight = 0.04
      pos [set every repeat] = delay_pos
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $str("$"+str(cdd_delay_amt)) + "\n" + "\n" + str(cdd_delay_wait) + " DAYS"
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    PolygonComponent GRFX_fix2
      fillColor = [0,0,0]
      lineColor = [0,0,0]
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
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    PolygonComponent cdd_trial_cue
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, 1.0000, -1.0000
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
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    KeyboardComponent cdd_trial_resp
      allowedKeys = '4', '5'
      correctAns = $immed_resp
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine cdd_end
    RoutineSettingsComponent cdd_end
      saveStartStop = False
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        exp = []
        choice = []
        choice_amt = []
        choice_wait = []
        other_amt = []
        other_wait = []
        choice_text = ""
        other_text = ""

        idx = int(random.random() * len(earnings))
        #("CDD", "immed", immed_amt, immed_wait, delay_amt, delay_wait)
        if earnings[idx][1] == "immed": #Ss chose immediate amount on selected bonus trial
            exp, choice, choice_amt, choice_wait, other_amt, other_wait = earnings[idx]
            choice_text = "$" + str(choice_amt) + " TODAY"
            other_text = "$" + str(other_amt) + " in " + str(other_wait) + " DAYS"
            my_loop.addData("cdd_bonus_choice", choice)
            my_loop.addData("cdd_bonus_amt", choice_amt)
            my_loop.addData("cdd_bonus_delay", choice_wait)
        else: #Ss chose delay amount on selected bonus trial
            exp, choice, other_amt, other_wait, choice_amt, choice_wait = earnings[idx]
            choice_text = "$" + str(choice_amt) + " in " + str(choice_wait) + " DAYS"
            other_text = "$" + str(other_amt) + " TODAY"
            my_loop.addData("cdd_bonus_choice", choice)
            my_loop.addData("cdd_bonus_amt", choice_amt)
            my_loop.addData("cdd_bonus_delay", choice_wait)

        # Print the bonus to the log, just in case
        print("Bonus:")
        print(choice_text) # What the participant gets
        print("rather than")
        print(other_text) # What the participant did not get

        # Create a file that has all of the bonuses
        # Put into a higher directory containing only bonuses
        filename = u'../../../datasets/SDDM/bonus'

        if not os.path.exists(filename):
            os.makedirs(filename)

        os.chdir(filename)

        # Remove the participant's task from participant's name -- that is, only get the last four characters
        participant_name = expInfo['participant'][-4:]

        # Create the bonus "phrase" that will go into the file
        bonus_filename = "bonus_all_" + participant_name + expInfo['session'] + ".txt"

        # If the file already exists, append to the end. If not, create new file
        f = open(bonus_filename, "a")

        # Write the bonus phrase
        bonus_phrase = "CDD bonus is: " + choice_text + " rather than " + other_text + "\n"
        f.write(bonus_phrase)
        f.close()
    TextComponent cdd_end_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Delay Discounting Task *
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    TextComponent cdd_end_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = You have completed the Delay Discounting Task!
      wrapWidth = 1.35
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    TextComponent cdd_end_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent cdd_end_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cdd_term_check
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    UnknownComponent cdd_term_check_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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    CodeComponent cdd_term_check_code
      Code Type = Py
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      Begin Routine:
        if exp_proceed == False:
            core.quit()
  Routine cdd_bonus
    RoutineSettingsComponent cdd_bonus
      disabled = True
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    CodeComponent cdd_bonus_code
      Code Type = Py
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      Begin Routine:
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    TextComponent cdd_bonus_thanks_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.35
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      text:
        Your randomly selected *bonus earnings trial* is from the
        Delay Discounting Task!
    TextComponent cdd_bonus_box
      letterHeight = 0.04
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = In this trial, you chose to receive:
      wrapWidth = 1.25
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    TextComponent cdd_bonus_choice_txt
      color = -1.0000, 0.0039, -1.0000
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $choice_text
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    TextComponent cdd_bonus_rather_txt
      letterHeight = 0.04
      pos = (0, -0.125)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = rather than
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    TextComponent cdd_bonus_other_txt
      color = 0.9608, 0.0039, -0.1059
      letterHeight = 0.055
      pos = (0, -0.225)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $other_text
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    TextComponent cdd_bonus_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to end task
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    KeyboardComponent cdd_bonus_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cdd_pract_iti
    RoutineSettingsComponent cdd_pract_iti
      saveStartStop = False
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    CodeComponent cdd_pract_iti1_code
      Code Type = Py
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      Begin Routine:
        #3 CDD practice trials
        if cdd_pract_trials.thisTrialN == 2: #after the last practice trial
            continueRoutine = False #do not run ITI fixation
    PolygonComponent cdd_pract_iti1_poly
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine cdd_trial_iti
    RoutineSettingsComponent cdd_trial_iti
      saveStartStop = False
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    CodeComponent cdd_trial_iti_code
      Code Type = Py
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      Begin Routine:
        iti_time = iti_list[my_loop.thisIndex] + delta_time #variable ITI for non-practice trials
        #96 trials in CDD task
        if cdd_trials.thisTrialN == 95: #after the final task trial
            continueRoutine = False #do not show ITI fixation
      End Routine:
        my_loop.addData("cdd_delta_time", delta_time) #record current trial delta time in output
        my_loop.addData("cdd_iti_time", iti_time) #record current trial ITI time in output
    PolygonComponent cdd_trial_iti_poly
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 1.0000, 1.0000, 1.0000
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_time
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  Routine cdd_pract_feedback
    RoutineSettingsComponent cdd_pract_feedback
      saveStartStop = False
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    CodeComponent cdd_pract_feedback_py
      Code Type = Py
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      Begin Routine:
        #Ss did not respond
        if len(pract_key) == 0:
            #cdd_msg = "NO RESPONSE"
            feedback_img = "images/FB_nonresp.png"
        #Ss chose smaller, immediate option
        elif pract_immed_key:
            #cdd_msg = "$ NOW"
            feedback_img = "images/FB_now.png"
        #Ss chose larger, delayed option
        else:
            #cdd_msg = "$ LATER"
            feedback_img = "images/FB_later.png"
    ImageComponent cdd_pract_FB_img
      image [set every repeat] = $feedback_img
      saveStartStop = False
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent cdd_pract_feedback_txt
      disabled = True
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $cdd_msg
      wrapWidth = 1.25
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  Routine cdd_pract_conf
    RoutineSettingsComponent cdd_pract_conf
      saveStartStop = False
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    CodeComponent cdd_pract_conf_py
      Code Type = Py
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      Begin Routine:
        if len(pract_key) == 0: #Ss did not respond to choice trial
            continueRoutine = False

        #set all 4 boxes as gray by default
        conf1_color = [0, 0, 0]
        conf2_color = [0, 0, 0]
        conf3_color = [0, 0, 0]
        conf4_color = [0, 0, 0]
      Each Frame:
        pract_conf_key = cdd_pract_conf_resp.keys
        #confidence rating received
        if len(pract_conf_key) == 1:
            pract_conf_key = confkey_map[pract_conf_key[-1]]
            #not at all confident
            if pract_conf_key == "1":
                conf1_color = "darkgray"
                conf2_color = [0, 0, 0]
                conf3_color = [0, 0, 0]
                conf4_color = [0, 0, 0]
            #less confident
            elif pract_conf_key == "2":
                conf1_color = [0, 0, 0]
                conf2_color = "darkgray"
                conf3_color = [0, 0, 0]
                conf4_color = [0, 0, 0]
            #somewhat confident
            elif pract_conf_key == "3":
                conf1_color = [0, 0, 0]
                conf2_color = [0, 0, 0]
                conf3_color = "darkgray"
                conf4_color = [0, 0, 0]
            #very confident
            elif pract_conf_key == "4":
                conf1_color = [0, 0, 0]
                conf2_color = [0, 0, 0]
                conf3_color = [0, 0, 0]
                conf4_color = "darkgray"
    TextComponent cdd_pract_conf_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = How confident are you in your choice?
      wrapWidth = 1.25
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    PolygonComponent cdd_pract_conf1
      fillColor [set every frame] = $conf1_color
      lineWidth = 10
      pos = (-0.6, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent cdd_pract_conf1_txt
      letterHeight = 0.04
      pos = (-0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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      text:
        Not at all
        confident

        1
    PolygonComponent cdd_pract_conf2
      fillColor [set every frame] = $conf2_color
      lineWidth = 10
      pos = (-0.2, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent cdd_pract_conf2_txt
      letterHeight = 0.04
      pos = (-0.2, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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      text:
        Less
        confident

        2
    PolygonComponent cdd_pract_conf3
      fillColor [set every frame] = $conf3_color
      lineWidth = 10
      pos = (0.2, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent cdd_pract_conf3_txt
      letterHeight = 0.04
      pos = (0.2, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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      text:
        Somewhat
        confident

        3
    PolygonComponent cdd_pract_conf4
      fillColor [set every frame] = $conf4_color
      lineWidth = 10
      pos = (0.6, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent cdd_pract_conf4_txt
      letterHeight = 0.04
      pos = (0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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      text:
        Very
        confident

        4
    KeyboardComponent cdd_pract_conf_resp
      allowedKeys = '2', '3', 'j', 'k'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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  Routine BPET_end
    RoutineSettingsComponent BPET_end
      saveStartStop = False
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    CodeComponent BP_close
      Code Type = Py
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      Begin Routine:
        ser.close()
    CodeComponent ET_close
      Code Type = Py
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      Begin Routine:
        ## Step 7: Disconnect Eye Tracker and download EDF file ----------------------------
        retrieve_data()
  Routine cdd_instr2
    RoutineSettingsComponent cdd_instr2
      saveStartStop = False
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    TextComponent cdd_instr2_txt
      letterHeight = 0.04
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        Please read each option carefully. When the green circle appears, use the color buttons on the response pad to indicate your choice:

        Press YELLOW to select the left option
        Press GREEN to select the right option
    ImageComponent cdd_instr2_img
      image = images/response_box1-2.png
      pos = (0, -0.1)
      saveStartStop = False
      size = (0.6, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent cdd_instr2_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent cdd_instr2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cdd_instr3
    RoutineSettingsComponent cdd_instr3
      saveStartStop = False
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    TextComponent cdd_instr3_txt
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.35
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      text:
        After each choice, you will be asked to rate your choice confidence.
        1 indicates you couldn't decide which option you preferred and chose at random, while 4 indicates total certainty in your choice. Use the number keys on the response pad to indicate your confidence:
    ImageComponent cdd_instr3_img
      image = images/response_box1-2.png
      pos = (0, -0.15)
      saveStartStop = False
      size = (0.6, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent cdd_instr3_left_txt
      letterHeight = 0.035
      pos = (-0.575, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        1 - Not at all confident
         2 - Less confident
    TextComponent cdd_instr3_right_txt
      letterHeight = 0.035
      pos = (0.575, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        3 - Somewhat confident
         4 - Very confident
    TextComponent cdd_instr3_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent cdd_instr3_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine BPET_setup
  Routine cdd_instr1
  Routine cdd_instr2
  Routine cdd_instr3
  Routine cdd_pract_instr
  Routine cdd_init_fix
  LoopInitiator cdd_pract_trials loopType="TrialHandler"
    conditionsFile = cdd_practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'idm_task': 'cdd', 'item': 1, 'cdd_immed_amt': 10, 'cdd_immed_wait': 0, 'cdd_delay_amt': 65, 'cdd_delay_wait': 9},
      {'idm_task': 'cdd', 'item': 2, 'cdd_immed_amt': 25, 'cdd_immed_wait': 0, 'cdd_delay_amt': 35, 'cdd_delay_wait': 150},
      {'idm_task': 'cdd', 'item': 3, 'cdd_immed_amt': 10, 'cdd_immed_wait': 0, 'cdd_delay_amt': 19, 'cdd_delay_wait': 89}]
    Routine cdd_pract_trial
    Routine cdd_pract_feedback
    Routine cdd_pract_conf
    Routine cdd_pract_iti
  LoopTerminator cdd_pract_trials
  Routine cdd_trial_instr
  Routine cdd_init_fix
  LoopInitiator cdd_trials loopType="TrialHandler"
    conditionsFile = cdd_trials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'idm_task': 'cdd', 'item': 1, 'cdd_immed_amt': 20, 'cdd_immed_wait': 0, 'cdd_delay_amt': 25, 'cdd_delay_wait': 90, 'cdd_catch_trial': 0},
      {'idm_task': 'cdd', 'item': 2, 'cdd_immed_amt': 20, 'cdd_immed_wait': 0, 'cdd_delay_amt': 24, 'cdd_delay_wait': 5, 'cdd_catch_trial': 0},
      {'idm_task': 'cdd', 'item': 3, 'cdd_immed_amt': 20, 'cdd_immed_wait': 0, 'cdd_delay_amt': 26, 'cdd_delay_wait': 11, 'cdd_catch_trial': 0},
      {'idm_task': 'cdd', 'item': 4, 'cdd_immed_amt': 20, 'cdd_immed_wait': 0, 'cdd_delay_amt': 25, 'cdd_delay_wait': 59, 'cdd_catch_trial': 0},
      {'idm_task': 'cdd', 'item': 5, 'cdd_immed_amt': 20, 'cdd_immed_wait': 0, 'cdd_delay_amt': 24, 'cdd_delay_wait': 150, 'cdd_catch_trial': 0},
      {'idm_task': 'cdd', 'item': 6, 'cdd_immed_amt': 20, 'cdd_immed_wait': 0, 'cdd_delay_amt': 26, 'cdd_delay_wait': 31, 'cdd_catch_trial': 0},
      {'idm_task': 'cdd', 'item': 7, 'cdd_immed_amt': 20, 'cdd_immed_wait': 0, 'cdd_delay_amt': 31, 'cdd_delay_wait': 59, 'cdd_catch_trial': 0},
      {'idm_task': 'cdd', 'item': 8, 'cdd_immed_amt': 20, 'cdd_immed_wait': 0, 'cdd_delay_amt': 31, 'cdd_delay_wait': 150, 'cdd_catch_trial': 0},
      {'idm_task': 'cdd', 'item': 9, 'cdd_immed_amt': 20, 'cdd_immed_wait': 0, 'cdd_delay_amt': 29, 'cdd_delay_wait': 10, 'cdd_catch_trial': 0},
      {'idm_task': 'cdd', 'item': 10, 'cdd_immed_amt': 20, 'cdd_immed_wait': 0, 'cdd_delay_amt': 29, 'cdd_delay_wait': 29, 'cdd_catch_trial': 0}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
    Routine cdd_trial
    Routine cdd_feedback
    Routine cdd_conf
    Routine cdd_trial_iti
  LoopTerminator cdd_trials
  Routine BPET_end
  Routine cdd_end
  Routine cdd_bonus
