PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Data filename = u'../../../datasets/SDDM/CPDM/24-%s/%s_%s' % (expInfo['participant'], expInfo['participant'], expInfo['session'])
  Experiment info = {'participant': 'CPDM', 'session': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Use version = 2023.2.2
  Window size (pixels) = [2560, 1440]
  expName = CPDM
  keyboardBackend = Pyglet
  runMode = 0
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Routines
  Routine BPET_setup
    RoutineSettingsComponent BPET_setup
      saveStartStop = False
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    CodeComponent BP_start
      Code Type = Py
      Begin Experiment:
        import serial
        ser = serial.Serial("COM5", 115200, timeout=1) #define serial port (always same)
        ser.write("RR".encode()) #clear serial port
        ser.write("02".encode()) #begin BIOPAC recording at start of experiment
    CodeComponent ET_start
      Code Type = Py
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      Before Experiment:
        import os
        import platform
        import pylink
        import random
        import sys
        import time
        import numpy as np
        from numpy import (sin, cos, tan, log, log10, pi, average,
                           sqrt, std, deg2rad, rad2deg, linspace, asarray)
        #from numpy.random import random, randint, normal, shuffle, choice as randchoice
        from psychopy import locale_setup
        from psychopy import prefs
        from psychopy import clock, colors, core, data, event, gui, layout, logging, monitors, sound, visual
        from psychopy.constants import (NOT_STARTED, STARTED, PLAYING, PAUSED,
                                        STOPPED, FINISHED, PRESSED, RELEASED, FOREVER)
        from psychopy.hardware import keyboard
        from EyeLinkCoreGraphicsPsychoPy import EyeLinkCoreGraphicsPsychoPy
        from PIL import Image  # for preparing Host backdrop image
        from string import ascii_letters, digits

        # Set to True to run task in full screen mode
        # Easier to debug script in non-full screen mode
        full_screen = True
      Begin Experiment:
        class WrapTest(object):
            def __init__(self, el_tracker):
                self.msg = False
                self.el_tracker = el_tracker

            def eyetrack_flip(self, func):
                def wrap():
                    func()
                    if self.msg:
                        self.el_tracker.sendMessage('image_onset')
                        self.msg = False
                return wrap

        # Set up EDF data file name and local data folder
        #
        # EDF data filename should not exceed 8 alphanumeric characters
        # Use ONLY number 0-9, letters, & _ (underscore) in filename
        edf_fname = '{0}'.format(expInfo["participant"])

        # Prompt user to specify an EDF data filename
        # before opening fullscreen window
        dlg_title = 'Enter EDF File Name'
        dlg_prompt = 'Please enter a file name with 8 or fewer characters\n' + \
                     '[letters, numbers, and underscore].'

        # Loop until a valid filename
        while True:
            dlg = gui.Dlg(dlg_title)
            dlg.addText(dlg_prompt)
            dlg.addField('File Name:', edf_fname)
            # show dialog and wait for OK or Cancel
            ok_data = dlg.show()
            if dlg.OK:  # if ok_data is not None
                print('EDF data filename: {}'.format(ok_data[0]))
            else:
                print('user cancelled')
                core.quit()
                sys.exit()

            # get string entered by experimenter
            tmp_str = dlg.data[0]
            # strip trailing characters, ignore ".edf" extension
            edf_fname = tmp_str.rstrip().split('.')[0]

            # check if filename is valid (length <= 8 & no special char)
            allowed_char = ascii_letters + digits + '_'
            if not all([c in allowed_char for c in edf_fname]):
                print('ERROR: Invalid EDF filename')
            elif len(edf_fname) > 8:
                print('ERROR: EDF filename should not exceed 8 characters')
            else:
                break

        # Set up folder to store EDF data files and associated resources
        results_folder = 'results'
        if not os.path.exists(results_folder):
            os.makedirs(results_folder)

        # Download EDF data file from EyeLink Host PC to local hard
        # drive at end of each testing session, rename EDF to
        # include session start date/time
        time_str = time.strftime("_%Y_%m_%d_%H_%M", time.localtime())
        session_identifier = edf_fname + time_str

        # Create a folder for current testing session in "results" folder
        session_folder = os.path.join(results_folder, session_identifier)
        if not os.path.exists(session_folder):
            os.makedirs(session_folder)

        ## Step 1: Connect to EyeLink Host PC ----------------------------
        #
        # The Host IP address, by default, is "100.1.1.1".
        # "el_tracker" object created can be accessed through Pylink
        # Set Host PC address to "None" (without quotes) to run script in "Dummy Mode"
        el_tracker = pylink.EyeLink("100.1.1.1")
        wrapper = WrapTest(el_tracker)
        win.flip = wrapper.eyetrack_flip(win.flip)

        ## Step 2: Open an EDF data file on Host PC ----------------------------
        edf_file = edf_fname + ".EDF"
        try:
            el_tracker.openDataFile(edf_file)
        except RuntimeError as err:
            print('ERROR:', err)
            # close link if one is open
            if el_tracker.isConnected():
                el_tracker.close()
            core.quit()
            sys.exit()

        # Add header text to EDF file to identify current experiment name
        # This is OPTIONAL. If your text starts with "RECORDED BY " it will be
        # available in DataViewer's Inspector window by clicking
        # EDF session node in the top panel and looking for "Recorded By:"
        # field in the bottom panel of Inspector.
        preamble_text = 'RECORDED BY %s' % os.path.basename(__file__)
        el_tracker.sendCommand("add_file_preamble_text '%s'" % preamble_text)


        ## Step 3: Configure eye-tracker ----------------------------
        #
        # Put eye-tracker in offline mode before changing tracking parameters
        el_tracker.setOfflineMode()

        # Get software version:  1-EyeLink I, 2-EyeLink II, 3/4-EyeLink 1000,
        # 5-EyeLink 1000 Plus, 6-Portable DUO
        eyelink_ver = 6  # set version to 0, in case running in Dummy mode
        vstr = el_tracker.getTrackerVersionString()
        eyelink_ver = int(vstr.split()[-1].split('.')[0])
        # print out version info in shell
        print('Running experiment on %s, version %d' % (vstr, eyelink_ver))

        # File and Link data control
        # Eye events to save in EDF file, include everything by default
        file_event_flags = 'LEFT,RIGHT,FIXATION,SACCADE,BLINK,MESSAGE,BUTTON,INPUT'
        # Eye events to make available over link, include everything by default
        link_event_flags = 'LEFT,RIGHT,FIXATION,SACCADE,BLINK,BUTTON,FIXUPDATE,INPUT'
        # Sample data to save in EDF data file and to make available
        # over link, include 'HTARGET' flag to save head target sticker
        # data for supported eye trackers
        if eyelink_ver > 3:
            file_sample_flags = 'LEFT,RIGHT,GAZE,HREF,RAW,AREA,HTARGET,GAZERES,BUTTON,STATUS,INPUT'
            link_sample_flags = 'LEFT,RIGHT,GAZE,GAZERES,AREA,HTARGET,STATUS,INPUT'
        else:
            file_sample_flags = 'LEFT,RIGHT,GAZE,HREF,RAW,AREA,GAZERES,BUTTON,STATUS,INPUT'
            link_sample_flags = 'LEFT,RIGHT,GAZE,GAZERES,AREA,STATUS,INPUT'
        el_tracker.sendCommand("file_event_filter = %s" % file_event_flags)
        el_tracker.sendCommand("file_sample_data = %s" % file_sample_flags)
        el_tracker.sendCommand("link_event_filter = %s" % link_event_flags)
        el_tracker.sendCommand("link_sample_data = %s" % link_sample_flags)

        # Choose calibration type: H3, HV3, HV5, HV13 (HV = horizontal/vertical),
        el_tracker.sendCommand("calibration_type = HV9")
        # Set a gamepad button to accept calibration/drift check target
        # Needs a supported gamepad/button box connected to Host PC
        el_tracker.sendCommand("button_function 5 'accept_target_fixation'")
        ##when running, if issues with win, move to Begin Routine
        # Get native screen resolution used by PsychoPy
        scn_width, scn_height = win.size

        # Pass display pixel coordinates (left, top, right, bottom) to eye-tracker
        # see EyeLink Installation Guide, "Customizing Screen Settings"
        el_coords = "screen_pixel_coords = 0 0 %d %d" % (scn_width - 1, scn_height - 1)
        el_tracker.sendCommand(el_coords)

        # Write DISPLAY_COORDS message to EDF file
        # Data Viewer needs this info for proper visualization, see Data
        # Viewer User Manual, "Protocol for EyeLink Data to Viewer Integration"
        dv_coords = "DISPLAY_COORDS  0 0 %d %d" % (scn_width - 1, scn_height - 1)
        el_tracker.sendMessage(dv_coords)
      Begin Routine:
        ## Configure graphics environment (genv) for tracker calibration
        genv = EyeLinkCoreGraphicsPsychoPy(el_tracker, win)
        #print(genv)  # print out version number of CoreGraphics library
        # Set background and foreground colors for calibration target
        # in PsychoPy, (-1, -1, -1)=black, (1, 1, 1)=white, (0, 0, 0)=mid-gray
        foreground_color = (-1, -1, -1)
        background_color = win.color
        genv.setCalibrationColors(foreground_color, background_color)

        ## Set up calibration target
        #
        # Target could be a "circle" (default), "picture", "movie" clip,
        # or rotating "spiral". To configure type of calibration target, set
        # genv.setTargetType to "circle", "picture", "movie", or "spiral",
        #  e.g., genv.setTargetType('picture')
        #
        # Use gen.setPictureTarget() to set "picture" target
        # genv.setPictureTarget(os.path.join('images', 'fixTarget.bmp'))
        #
        # Use genv.setMovieTarget() to set "movie" target
        # genv.setMovieTarget(os.path.join('videos', 'calibVid.mov'))

        # Use picture as calibration target
        genv.setTargetType('picture')
        genv.setPictureTarget(os.path.join('images', 'fixTarget.bmp'))

        # Configure the size of the calibration target (in pixels)
        # this option applies only to "circle" and "spiral" targets
        # genv.setTargetSize(24)

        # Beeps to play during calibration, validation and drift correction
        # parameters: target, good, error
        #     target -- sound to play when target moves
        #     good -- sound to play on successful operation
        #     error -- sound to play on failure or interruption
        # Each parameter could be ''--default sound, 'off'--no sound, or a wav file
        genv.setCalibrationSounds('', '', '')

        # Request Pylink to use PsychoPy window opened above for calibration
        pylink.openGraphicsEx(genv)

        ## Helper functions for trial handling

        def show_msg(win, text, wait_for_keypress=True):
            """ Show task instructions on screen"""
            msg = visual.TextStim(win, text,
                                  color=genv.getForegroundColor(),
                                  wrapWidth=scn_width/2)
            msg.draw()
            win.flip()
            # wait indefinitely, terminates upon any key press
            if wait_for_keypress:
                event.waitKeys()
                #clear_screen(win)

        def retrieve_data():
            """ Retrieves EDF data file from Host PC
            file_to_retrieve: EDF on Host to download
            win: current window used by experimental script
            """
            el_tracker = pylink.getEYELINK()
            if el_tracker.isConnected():
                # Terminate current trial first if task terminated prematurely
                error = el_tracker.isRecording()
                if error == pylink.TRIAL_OK:
                    abort_trial()
                # Put tracker in Offline mode
                el_tracker.setOfflineMode()
                # Clear Host PC screen and wait for 500 ms
                el_tracker.sendCommand('clear_screen 0')
                pylink.msecDelay(500)
                # Close EDF data file on Host
                el_tracker.closeDataFile()
                # Show file transfer message onscreen
                msg = 'Transferring data...'
                show_msg(win, msg, wait_for_keypress=False)
                # Download EDF data file from Host PC to local data folder
                # Parameters: source_file_on_the_host, destination_file_on_local_drive
                local_edf = os.path.join(session_folder, session_identifier + '.EDF')
                try:
                    el_tracker.receiveDataFile(edf_file, local_edf)
                except RuntimeError as error:
                    print('ERROR:', error)
                # Close link to eye-tracker.
                el_tracker.close()


        def abort_trial():
            """Ends recording """
            el_tracker = pylink.getEYELINK()
            # Stop recording
            if el_tracker.isRecording():
                # add 100 ms to catch final trial events
                pylink.pumpDelay(100)
                el_tracker.stopRecording()
            # Send message to clear Data Viewer screen
            bgcolor_RGB = (116, 116, 116)
            el_tracker.sendMessage('!V CLEAR %d %d %d' % bgcolor_RGB)
            # Send message to mark trial end
            el_tracker.sendMessage('TRIAL_RESULT %d' % pylink.TRIAL_ERROR)

            return pylink.TRIAL_ERROR


        ## Step 5: Set up camera and calibrate eye-tracker ----------------------------

        # Show task instructions
        task_msg = 'Press Ctrl-C to if you need to quit the task early\n'
        task_msg = task_msg + '\nPress ENTER twice to calibrate tracker'
        show_msg(win, task_msg)

        try:
            el_tracker.doTrackerSetup()
        except RuntimeError as err:
            print("Error", err)
            el_tracker.exitCalibration()
  Routine cpdm_instr1
    RoutineSettingsComponent cpdm_instr1
      saveStartStop = False
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    CodeComponent cpdm_instr1_py
      Code Type = Py
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      Before Experiment:
        import random
        exp_proceed = True
        earnings = []
      Begin Routine:
        practice_loop_name = "cpdm_pract_trials"
        loop_name = "cpdm_trials"
    ImageComponent cpdm_instr1_img
      image = images/response_box2.png
      pos = (0, -0.06)
      saveStartStop = False
      size = (0.6, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent cpdm_instr1_name_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Visual Decision Making Task *
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    TextComponent cpdm_instr1_txt
      letterHeight = 0.0325
      pos = (0, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.35
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      text:
        You will be presented with a series of oriented patterns across multiple trials. Your job is to decide if the pattern is tilting to the left or right. In your response, you will also indicate how confident you are in your decision.












        For each trial, you will have 2 seconds to respond.
    TextComponent cpdm_instr1_LH_txt
      color = 1.0000, 0.6863, -1.0000
      letterHeight = 0.025
      pos = (-0.3, 0.07)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        LEFT tilt and HIGH confidence
    TextComponent cpdm_instr1_RH_txt
      color = 1.0000, 0.6863, -1.0000
      letterHeight = 0.025
      pos = (0.3, 0.07)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        RIGHT tilt and HIGH confidence
    TextComponent cpdm_instr1_LL_txt
      color = 1.0000, 0.6863, -1.0000
      letterHeight = 0.025
      pos = (-0.3, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        LEFT tilt and LOW confidence
    TextComponent cpdm_instr1_RL_txt
      color = 1.0000, 0.6863, -1.0000
      letterHeight = 0.025
      pos = (0.3, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        RIGHT tilt and LOW confidence
    TextComponent cpdm_instr1_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent cpdm_instr1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cpdm_pract_instr
    RoutineSettingsComponent cpdm_pract_instr
      saveStartStop = False
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    TextComponent cpdm_pract_instr_name_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Visual Decision Making Task *
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    TextComponent cpdm_pract_instr_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        Let's practice!

        In these example trials, the box you select will turn green if you make the correct choice regarding tilt of the pattern. If you are incorrect, the box you select will turn red. Feedback about performance during the practice trials is to help you understand the task, but will not be given during the actual experiment.
    TextComponent cpdm_pract_instr_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to begin.
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    KeyboardComponent cpdm_pract_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cpdm_init_fix
    RoutineSettingsComponent cpdm_init_fix
      saveStartStop = False
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    PolygonComponent cpdm_init_fix_poly
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine cpdm_pract_trial
    RoutineSettingsComponent cpdm_pract_trial
      saveStartStop = False
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    CodeComponent cpdm_pract_trial_py
      Code Type = Py
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      Begin Experiment:
        #set default gray for all four response boxes
        left_high_color = [0,0,0]
        left_low_color = [0,0,0]
        right_high_color = [0,0,0]
        right_low_color = [0,0,0]
      Begin Routine:
        my_loop = eval(practice_loop_name)
        trial_acc = 0 #initially defined as INCORRECT
        trial_conf = 0 #initially defined as LOW CONF

        #set default gray for all four response boxes
        left_high_color = [0,0,0]
        left_low_color = [0,0,0]
        right_high_color = [0,0,0]
        right_low_color = [0,0,0]

        is_clockwise = False #preset correct tilt to left
        if cpdm_gabor_orient > 0.0: #if current trial gabor orientation is right
            is_clockwise = True #redefine correct tilt response to right
        elif cpdm_gabor_orient == 0.0: #if current trial gabor orientation is vertical
            rand_num = random.randint(1,2) #randomly choose "correct" response
            if rand_num == 1:
                is_clockwise = True
            else:
                is_clockwise = False
      Each Frame:
        ##Each trial and resp
        #checks which key Ss pressed and changes the color of the selected box
        #depending on correctness of selection

        key = cpdm_pract_trial_resp.keys
        if len(key) == 1: #Ss responds
            if key == "1": #Ss selected LEFT/HIGH
                trial_conf = 1 #reassign to HIGH CONF
                if is_clockwise == False: #correct resp is LEFT
                    left_high_color = "green" #change upper-left box to green
                    trial_acc = 1 #reassign to CORRECT
                else: #correct resp is RIGHT
                    left_high_color = "red"
            elif key == "3": #Ss selected LEFT/LOW
                if is_clockwise == False: #correct resp is LEFT
                    left_low_color = "green"
                    trial_acc = 1
                else: #correct resp is RIGHT
                    left_low_color = "red"
            elif key == "2": #Ss selected RIGHT/HIGH
                trial_conf = 1
                if is_clockwise == True: #correct resp is RIGHT
                    right_high_color = "green"
                    trial_acc = 1
                    trial_conf = 1
                else: #correct resp is LEFT
                    right_high_color = "red"
            elif key == "4": #Ss selected RIGHT/LOW
                if is_clockwise == True: #correct resp is RIGHT
                    right_low_color = "green"
                    trial_acc = 1
                else: #correct resp is LEFT
                    right_low_color = "red"
      End Routine:
        my_loop.addData("cpdm_pract_acc", trial_acc) #record trial accuracy
        my_loop.addData("cpdm_pract_conf", trial_conf) #record trial confidence
        my_loop.addData("cpdm_trial_type", "practice") #record current trial as "practice"
    GratingComponent cpdm_pract_trial_gabor
      contrast [set every repeat] = cpdm_gabor_contrast
      mask = gauss
      ori [set every repeat] = cpdm_gabor_orient
      saveStartStop = False
      sf = 6
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      tex = sin
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    PolygonComponent cpdm_pract_trial_left_high_poly
      fillColor [set every frame] = $left_high_color
      lineWidth = 15
      pos = (-0.45, 0.25)
      saveStartStop = False
      shape = rectangle
      size = (0.35, 0.35)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2
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    PolygonComponent cpdm_pract_trial_right_high_poly
      fillColor [set every frame] = $right_high_color
      lineWidth = 15
      pos = (0.45, 0.25)
      saveStartStop = False
      shape = rectangle
      size = (0.35, 0.35)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2
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    PolygonComponent cpdm_pract_trial_left_low_poly
      fillColor [set every frame] = $left_low_color
      lineWidth = 15
      pos = (-0.45, -0.25)
      saveStartStop = False
      shape = rectangle
      size = (0.35, 0.35)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2
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    PolygonComponent cpdm_pract_trial_right_low_poly
      fillColor [set every frame] = $right_low_color
      lineWidth = 15
      pos = (0.45, -0.25)
      saveStartStop = False
      shape = rectangle
      size = (0.35, 0.35)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2
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    TextComponent cpdm_pract_trial_left_high_txt
      letterHeight = 0.035
      pos = (-0.45, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2
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      text:
        LEFT

        HIGH Confidence

        \$9 or \$0
    TextComponent cpdm_pract_trial_right_high_txt
      letterHeight = 0.035
      pos = (0.45, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2
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      text:
        RIGHT

        HIGH Confidence

        \$9 or \$0
    TextComponent cpdm_pract_trial_left_low_txt
      letterHeight = 0.035
      pos = (-0.45, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2
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      text:
        LEFT

        LOW Confidence

        \$8 or \$6
    TextComponent cpdm_pract_trial_right_low_txt
      letterHeight = 0.035
      pos = (0.45, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2
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      text:
        RIGHT

        LOW Confidence

        \$8 or \$6
    KeyboardComponent cpdm_pract_trial_resp
      allowedKeys = '1', '2', '3', '4'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2
      store = first key
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  Routine cpdm_pract_iti
    RoutineSettingsComponent cpdm_pract_iti
      saveStartStop = False
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    CodeComponent cpdm_pract_iti_py
      Code Type = Py
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      Begin Routine:
        #5 CPDM practice trials
        if cpdm_pract_trials.thisTrialN == 4:
            continueRoutine = False
    PolygonComponent cpdm_pract_iti_poly
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine cpdm_trial_instr
    RoutineSettingsComponent cpdm_trial_instr
      saveStartStop = False
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    TextComponent cpdm_trial_instr_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Visual Decision Making Task *
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    TextComponent cpdm_trial_instr_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        Now that you have practiced, the actual task will begin.

        In the following section, you will be presented with a series of trials similar to those you just practiced. Here, you will not receive feedback about your performance. The option you select will turn light gray to indicate your choice. For each trial, you have 2 seconds to make your decision.

        When a white cross appears, please focus your attention on the center of the screen.
    TextComponent cpdm_trial_instr_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to begin.
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    KeyboardComponent cpdm_trial_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cpdm_run_setter
    RoutineSettingsComponent cpdm_run_setter
      saveStartStop = False
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    CodeComponent cpdm_run_setter_py
      Code Type = Py
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      Begin Routine:
        #selects contrast schedule depending on run type
        if "low_vol" in cpdm_run_dimension: #low volatility run
            run_schedule = "cpdm-1contrast.xlsx" #be careful of relative paths
        else: #high volatility run
            run_schedule = "cpdm-5contrasts.xlsx"
        #flexible response text for high confidence options depending on run type
        if "low_risk" in cpdm_run_dimension: #low risk run
            left_resp_txt = "LEFT \n \n HIGH Confidence \n \n $9 or $0"
            right_resp_txt = "RIGHT \n \n HIGH Confidence \n \n $9 or $0"
        else: #high risk run
            left_resp_txt = "LEFT \n \n HIGH Confidence \n \n $13 or $0"
            right_resp_txt = "RIGHT \n \n HIGH Confidence \n \n $13 or $0"

        #create list of 200 random ITIs
        #iterate through list of ITIs, multiple by number of floats, divide by sum of original list
        #creates random list of ITI value for each trial which sum to 200
        iti_list = [random.random() for i in range(200)]
        s = sum(iti_list)
        iti_list = [i*200/s for i in iti_list]
  Routine cpdm_loop_instr
    RoutineSettingsComponent cpdm_loop_instr
      saveStartStop = False
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    CodeComponent cpdm_loop_instr_py
      Code Type = Py
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      Begin Experiment:
        loop_spec_instr = ""
        run_counter = 1
      Begin Routine:
        if "low_risk" in cpdm_run_dimension:
            corr_high_txt = "Correct \n High Confidence \n $9"
        else:
            corr_high_txt = "Correct \n High Confidence \n $13"
      End Routine:
        run_counter += 1
    TextComponent cpdm_loop_instr_code2
      letterHeight = 0.06
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Block " + str(run_counter)
      wrapWidth = 1.25
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    PolygonComponent cpdm_loop_instr_corr_high_poly
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 15
      pos = (-0.125, 0.125)
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    PolygonComponent cpdm_loop_instr_right_high_poly
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 15
      pos = (0.125, 0.125)
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.25)
      startVal [time (s)] = 0
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    PolygonComponent cpdm_loop_instr_left_low_poly
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 15
      pos = (-0.125, -0.125)
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    PolygonComponent cpdm_loop_instr_right_low_poly
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 15
      pos = (0.125, -0.125)
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent cpdm_loop_instr_corr_high_txt
      color = 0.1216, 0.4745, 0.1216
      letterHeight = 0.03
      pos = (-0.125, 0.125)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $corr_high_txt
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    TextComponent cpdm_loop_instr_incorr_high_txt
      color = salmon
      letterHeight = 0.03
      pos = (0.125, 0.125)
      saveStartStop = False
      startVal [time (s)] = 0
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      text:
        Incorrect
        High Confidence
        \$0
    TextComponent cpdm_loop_instr_corr_low_txt
      color = darkseagreen
      letterHeight = 0.03
      pos = (-0.125, -0.125)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Correct
        Low Confidence
        \$8
    TextComponent cpdm_loop_instr_incorr_low
      color = salmon
      letterHeight = 0.03
      pos = (0.125, -0.125)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Incorrect
        Low Confidence
        \$6
    TextComponent cpdm_loop_instr_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent cpdm_loop_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cpdm_trial
    RoutineSettingsComponent cpdm_trial
      saveStartStop = False
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    CodeComponent cpdm_trial_py
      Code Type = Py
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      Before Experiment:
        delta_time = 0 #used to calculate variable ITI
      Begin Routine:
        my_loop = eval(loop_name)
        stop_timer = None
        stopped_time = 0
        trial_acc = 0 #preset accuracy variable to 0 (incorrect)
        trial_conf = 0 #preset confidence variable to 0 (low)

        #set default gray for all four response boxes
        left_high_color = [0,0,0]
        left_low_color = [0,0,0]
        right_high_color = [0,0,0]
        right_low_color = [0,0,0]

        is_clockwise = False #gabor orientation is preset to Left tilting
        if cpdm_gabor_orient > 0.0: #cpdm_gabor_orient value is greater than 0
            is_clockwise = True #gabor orientation is set to Right tilting
        elif cpdm_gabor_orient == 0.0: #cpdm_gabor_orient value is equal than 0
            rand_num = random.randint(1,2) #randomly choose "correct" response
            if rand_num == 1:
                is_clockwise = True
            else:
                is_clockwise = False
      Each Frame:
        #checks if resp is received for each trial and which key was pressed
        #depending on which key is pressed, respective box color changes and
        #correct_resp variable is updated if correct (preassigned to 0)

        key = cpdm_trial_resp.keys
        if len(key) == 1: #Ss responds
            if stop_timer == None:
                stop_timer = core.Clock()
            else:
                stopped_time = stop_timer.getTime()
                if stopped_time >= 0.5:
                    continueRoutine = False

            if key == "1": #Left - High Confidence
                trial_conf = 1 #reassign to high confidence
                if is_clockwise == False: #correct left resp
                    left_high_color = "darkgray" #indicates selection
                    trial_acc = 1 #reassign to correct resp
                else: #incorrect left resp
                    left_high_color = "darkgray"
            elif key == "3": #Left - Low Confidence
                if is_clockwise == False: #correct left resp
                    left_low_color = "darkgray"
                    trial_acc = 1
                else:
                    left_low_color = "darkgray"
            elif key == "2": #Right - High Confidence
                trial_conf = 1
                if is_clockwise == True: #correct right resp
                    right_high_color = "darkgray"
                    trial_acc = 1
                else: #incorrect right resp
                    right_high_color = "darkgray"
            elif key == "4": #Right - Low Confidence
                if is_clockwise == True: #correct right resp
                    right_low_color = "darkgray"
                    trial_acc = 1
                else: #incorrect right resp
                    right_low_color = "darkgray"
      End Routine:
        my_loop.addData("cpdm_acc", trial_acc) #record trial accuracy
        my_loop.addData("cpdm_conf", trial_conf) #record trial confidence
        my_loop.addData("cpdm_trial_type", "task") #record trial type

        key = cpdm_trial_resp.keys

        if type(cpdm_trial_resp.rt) is list or cpdm_trial_resp.rt >= 2 - 0.5:
            delta_time = 0
        else:
            delta_time = max(0, 2 - (cpdm_trial_resp.rt + stopped_time))

        if "low_risk" in cpdm_run_dimension: #low risk payouts
            if key == "1": #LEFT/HIGH response
                if is_clockwise == False: #LEFT correct
                    my_loop.addData("cpdm_conf2", "high")
                    my_loop.addData("cpdm_money", 9)
                    if cpdm_gabor_orient != 0.0: #correct response is not random
                        earnings.append(("CPDM", 9, "CORRECT", "HIGH", item))
                else: #LEFT incorrect
                    my_loop.addData("cpdm_conf2", "high")
                    my_loop.addData("cpdm_money", 0)
                    if cpdm_gabor_orient != 0.0:
                        earnings.append(("CPDM", 0, "INCORRECT", "HIGH", item))
            elif key == "3": #LEFT/LOW response
                if is_clockwise == False: #LEFT correct
                    my_loop.addData("cpdm_conf2", "low")
                    my_loop.addData("cpdm_money", 8)
                    if cpdm_gabor_orient != 0.0:
                        earnings.append(("CPDM", 8, "CORRECT", "LOW", item))
                else: #LEFT incorrect
                    my_loop.addData("cpdm_conf2", "low")
                    my_loop.addData("cpdm_money", 6)
                    if cpdm_gabor_orient != 0.0:
                        earnings.append(("CPDM", 6, "INCORRECT", "LOW", item))
            elif key == "2": #RIGHT/HIGH response
                if is_clockwise == True: #RIGHT correct
                    my_loop.addData("cpdm_conf2", "high")
                    my_loop.addData("cpdm_money", 9)
                    if cpdm_gabor_orient != 0.0:
                        earnings.append(("CPDM", 9, "CORRECT", "HIGH", item))
                else: #RIGHT incorrect
                    my_loop.addData("cpdm_conf2", "high")
                    my_loop.addData("cpdm_money", 0)
                    if cpdm_gabor_orient != 0.0:
                        earnings.append(("CPDM", 0, "INCORRECT", "HIGH", item))
            elif key == "4": #RIGHT/LOW response
                if is_clockwise == True: #RIGHT correct
                    my_loop.addData("cpdm_conf2", "low")
                    my_loop.addData("cpdm_money", 8)
                    if cpdm_gabor_orient != 0.0:
                        earnings.append(("CPDM", 8, "CORRECT", "LOW", item))
                else: #RIGHT incorrect
                    my_loop.addData("cpdm_conf2", "low")
                    my_loop.addData("cpdm_money", 6)
                    if cpdm_gabor_orient != 0.0:
                        earnings.append(("CPDM", 6, "INCORRECT", "LOW", item))
        else: #high risk payouts
            if key == "1": #LEFT/HIGH response
                #LEFT correct
                if is_clockwise == False:
                    my_loop.addData("cpdm_conf2", "high")
                    my_loop.addData("cpdm_money", 13)
                    if cpdm_gabor_orient != 0.0:
                        earnings.append(("CPDM", 13, "CORRECT", "HIGH", item))
                else: #LEFT incorrect
                    my_loop.addData("cpdm_conf2", "high")
                    my_loop.addData("cpdm_money", 0)
                    if cpdm_gabor_orient != 0.0:
                        earnings.append(("CPDM", 0, "INCORRECT", "HIGH", item))
            elif key == "3": #LEFT/LOW response
                if is_clockwise == False: #LEFT correct
                    my_loop.addData("cpdm_conf2", "low")
                    my_loop.addData("cpdm_money", 8)
                    if cpdm_gabor_orient != 0.0:
                        earnings.append(("CPDM", 8, "CORRECT", "LOW", item))
                else: #Left incorrect
                    my_loop.addData("cpdm_conf2", "low")
                    my_loop.addData("cpdm_money", 6)
                    if cpdm_gabor_orient != 0.0:
                        earnings.append(("CPDM", 6, "INCORRECT", "LOW", item))
            elif key == "2": #RIGHT/HIGH response
                if is_clockwise == True: #RIGHT correct
                    my_loop.addData("cpdm_conf2", "high")
                    my_loop.addData("cpdm_money", 13)
                    if cpdm_gabor_orient != 0.0:
                        earnings.append(("CPDM", 13, "CORRECT", "HIGH", item))
                else: #RIGHT incorrect
                    my_loop.addData("cpdm_conf2", "high")
                    my_loop.addData("cpdm_money", 0)
                    if cpdm_gabor_orient != 0.0:
                        earnings.append(("CPDM", 0, "INCORRECT", "HIGH", item))
            elif key == "4": #RIGHT/LOW response
                if is_clockwise == True: #RIGHT correct
                    my_loop.addData("cpdm_conf2", "low")
                    my_loop.addData("cpdm_money", 8)
                    if cpdm_gabor_orient != 0.0:
                        earnings.append(("CPDM", 8, "CORRECT", "LOW", item))
                else: #RIGHT incorrect
                    my_loop.addData("cpdm_conf2", "low")
                    my_loop.addData("cpdm_money", 6)
                    if cpdm_gabor_orient != 0.0:
                        earnings.append(("CPDM", 6, "INCORRECT", "LOW", item))
    CodeComponent BP_trial_trig
      Code Type = Py
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      Begin Routine:
        ser.write("20".encode()) #begin trial marker
        ser.flush()
      End Routine:
        ser.write("00".encode()) #end trial marker
        ser.flush()
    CodeComponent ET_record
      Code Type = Py
      Begin Experiment:
        et_trial_ct = 0
      Begin Routine:
        et_trial_ct += 1

        # Get reference to currently active EyeLink connection
        el_tracker = pylink.getEYELINK()
        wrapper.el_tracker = el_tracker
        wrapper.msg = True

        # Put tracker in offline mode first
        el_tracker.setOfflineMode()

        # Clear host screen before drawing backdrop
        #el_tracker.sendCommand('clear_screen 0')

        # Use the code commented below to convert the image and send the backdrop
        im = Image.open(os.path.join('images', 'cpdm_screen.png'))  # read image with PIL
        im = im.resize((scn_width, scn_height))
        img_pixels = im.load()  # access the pixel data of the image
        pixels = [[img_pixels[i, j] for i in range(scn_width)]
                  for j in range(scn_height)]
        el_tracker.bitmapBackdrop(scn_width, scn_height, pixels,
                                  0, 0, scn_width, scn_height,
                                  0, 0, pylink.BX_MAXCONTRAST)
        # Record_status_message : show some info on Host PC
        # Here we show how many trials have been tested
        status_msg = 'TRIAL NO. %d' % et_trial_ct
        el_tracker.sendCommand("record_status_message '%s'" % status_msg)

        # Send a "TRIALID" message to mark start of trial, see Data
        # Viewer User Manual, "Protocol for EyeLink Data to Viewer Integration"
        el_tracker.sendMessage('TRIALID %d' % et_trial_ct)
        trl_onset_time = core.getTime()  #get trial onset time
        el_tracker.sendMessage('!V TRIAL_VAR trial_onset %s' % trl_onset_time) # record trial onset

        # Start recording
        # arguments: sample_to_file, events_to_file, sample_over_link, event_over_link (1-yes, 0-no)
        el_tracker.startRecording(1, 1, 1, 1)

        # Allocate time for eye-tracker to cache samples
        pylink.pumpDelay(100)
      End Routine:
        el_tracker.sendMessage('!V TRIAL_VAR resp_key %s' % cpdm_trial_resp.keys) # record trial response

        el_tracker.sendMessage('END_TRIAL')
        # Stop recording; add 100 msec to catch final events before stopping
        pylink.pumpDelay(100)
        el_tracker.stopRecording()

        # Send a 'TRIAL_RESULT' message to mark end of trial, see Data
        # Viewer User Manual, "Protocol for EyeLink Data to Viewer Integration"
        el_tracker.sendMessage('TRIAL_RESULT %d' % pylink.TRIAL_OK)
    GratingComponent cpdm_trial_gabor
      contrast [set every repeat] = cpdm_gabor_contrast
      mask = gauss
      ori [set every repeat] = cpdm_gabor_orient
      sf = 6
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      tex = sin
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    PolygonComponent cpdm_trial_left_high_poly
      fillColor [set every frame] = $left_high_color
      lineWidth = 15
      pos = (-0.45, 0.25)
      saveStartStop = False
      shape = rectangle
      size = (0.35, 0.35)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2
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    PolygonComponent cpdm_trial_right_high_poly
      fillColor [set every frame] = $right_high_color
      lineWidth = 15
      pos = (0.45, 0.25)
      saveStartStop = False
      shape = rectangle
      size = (0.35, 0.35)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2
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    PolygonComponent cpdm_trial_left_low_poly
      fillColor [set every frame] = $left_low_color
      lineWidth = 15
      pos = (-0.45, -0.25)
      saveStartStop = False
      shape = rectangle
      size = (0.35, 0.35)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2
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    PolygonComponent cpdm_trial_right_low_poly
      fillColor [set every frame] = $right_low_color
      lineWidth = 15
      pos = (0.45, -0.25)
      saveStartStop = False
      shape = rectangle
      size = (0.35, 0.35)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2
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    TextComponent cpdm_trial_left_high_txt
      letterHeight = 0.035
      pos = (-0.45, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2
      text [set every repeat] = $left_resp_txt
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    TextComponent cpdm_trial_right_high_txt
      letterHeight = 0.035
      pos = (0.45, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2
      text [set every repeat] = $right_resp_txt
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    TextComponent cpdm_trial_left_low_txt
      letterHeight = 0.035
      pos = (-0.45, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2
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      text:
        LEFT

        LOW Confidence

        \$8 or \$6
    TextComponent cpdm_trial_right_low_txt
      letterHeight = 0.035
      pos = (0.45, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2
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      text:
        RIGHT

        LOW Confidence

        \$8 or \$6
    KeyboardComponent cpdm_trial_resp
      allowedKeys = '1', '2', '3', '4'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2
      store = first key
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  Routine cpdm_trial_iti
    RoutineSettingsComponent cpdm_trial_iti
      saveStartStop = False
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    CodeComponent cpdm_trials_iti_py
      Code Type = Py
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      Begin Routine:
        iti_time = iti_list[my_loop.thisIndex] + delta_time #variable ITI for non-practice trials
        if cpdm_trials.thisTrialN == 199: #200 CPDM trials per run
            continueRoutine = False #prevents ITI fixation after final task trial
      End Routine:
        my_loop.addData("cpdm_delta_time", delta_time) #record delta time
        my_loop.addData("cpdm_iti_time", iti_time) #record iti time
    PolygonComponent cpdm_trials_iti_poly
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_time
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  Routine cpdm_run_break
    RoutineSettingsComponent cpdm_run_break
      saveStartStop = False
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    CodeComponent cpdm_run_break_py
      Code Type = Py
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      Begin Experiment:
        run_break_text = "" #inital variable definition
        space_text = ""
      Begin Routine:
        run_break_text = "" #reset text variables
        space_text = ""

        #final run
        #if condition_runs.thisN == 3:
        run_break_text = "You have completed the Visual Decision Making Task!"
        space_text = "Press SPACE to continue."
        #first three runs
        #else:
         #   run_break_text = "Please feel free to take a short break. \n \n As you begin Block " + str(run_counter) + ", read the possible monetary values of each option carefully as they may have changed."
          #  space_text = "Press SPACE to continue."
    TextComponent cpdm_run_break1_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Visual Decision Making Task *
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    TextComponent cpdm_run_break_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $run_break_text
      wrapWidth = 1.35
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    TextComponent cpdm_run_break1_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $space_text
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    KeyboardComponent cpdm_run_break_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cpdm_term_check
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    UnknownComponent cpdm_term_check_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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    CodeComponent idm_term_check_py
      Code Type = Py
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      Begin Routine:
        if exp_proceed == False:
            core.quit()
  Routine cpdm_instr3
    RoutineSettingsComponent cpdm_instr3
      saveStartStop = False
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    TextComponent cpdm_instr3_name_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Visual Decision Making Task *
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    TextComponent cpdm_instr3_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        The answer you select for each trial will determine how much money you earn.

        You will complete 1 block of 200 trials.
    TextComponent cpdm_instr3_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent cpdm_instr3_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cpdm_instr2
    RoutineSettingsComponent cpdm_instr2
      saveStartStop = False
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    TextComponent cpdm_instr2_name_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Visual Decision Making Task *
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    TextComponent cpdm_instr2_instr_txt
      letterHeight = 0.03
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = You can tell "tilt" by which direction the top of the pattern is pointing:
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    ImageComponent cpdm_instr2_left_arrow
      image = images/arrow.png
      pos = (-0.4, 0.05)
      saveStartStop = False
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
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    GratingComponent cpdm_instr2_left_gabor
      contrast = 0.2
      mask = gauss
      ori = -5
      pos = (-0.4, -0.1)
      saveStartStop = False
      sf = 6
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      tex = sin
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    TextComponent cpdm_instr2_left_txt
      letterHeight = 0.03
      pos = (-0.4, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = This pattern tilts LEFT
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    ImageComponent cpdm_instr2_right_arrow
      flipHoriz = True
      image = images/arrow.png
      pos = (0.4, 0.05)
      saveStartStop = False
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
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    GratingComponent cpdm_instr2_right_gabor
      contrast = 0.2
      mask = gauss
      ori = 5
      pos = (0.4, -0.1)
      saveStartStop = False
      sf = 6
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      tex = sin
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    TextComponent cpdm_instr2_right_txt
      letterHeight = 0.03
      pos = (0.4, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = This pattern tilts RIGHT
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    TextComponent cpdm_instr2_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent cpdm_instr2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cpdm_earnings
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    UnknownComponent cpdm_earnings_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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    CodeComponent cpdm_earnings_py
      Code Type = Py
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    TextComponent cpdm_earnings_thanks_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.75
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      text:
        Thank you for participating in the
        Confidence and Perceptual Decision Making Task!
    TextComponent cpdm_payment_earn_txt
      letterHeight = 0.05
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = You have earned
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    TextComponent cpdm_earnings_amt_txt
      color = 0.1216, 0.4745, 0.1216
      letterHeight = 0.06
      pos = (0, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $earnings_text
      wrapWidth = 1.25
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    TextComponent cpdm_earnings_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to end.
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    KeyboardComponent cpdm_earnings_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cpdm_instr4
    RoutineSettingsComponent cpdm_instr4
      saveStartStop = False
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    TextComponent cpdm_instr4_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Visual Decision Making Task *
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    TextComponent cpdm_instr4_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        As you provide your responses, please note some pattern tilts will be harder to determine than others. On these trials, you may be less confident than on trials where the tilt is more obvious.

        Please remember to distinguish between trials in which you feel high and low confidence regarding the tilt of the pattern.
    TextComponent cpdm_instr4_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent cpdm_instr4_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  EyetrackerCalibrationRoutine cpdm_calibration
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    textColor = white
    units = from exp settings
  EyetrackerValidationRoutine cpdm_validation
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    cursorFillColor = green
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    saveAsImg = False
    showResults = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    targetPositions = NINE_POINTS
    textColor = auto
    units = from exp settings
  Routine BPET_end
    RoutineSettingsComponent BPET_end
      saveStartStop = False
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    CodeComponent BP_close
      Code Type = Py
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      Begin Routine:
        ser.write("RR".encode()) #flush all channels
        ser.close() #close serial port
    CodeComponent ET_close
      Code Type = Py
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      Begin Routine:
        ## Step 7: Disconnect and download EDF file ----------------------------
        retrieve_data()
  Routine cpdm_bonus
    RoutineSettingsComponent cpdm_bonus
      saveStartStop = False
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    CodeComponent cpdm_bonus_code
      Code Type = Py
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      Begin Routine:
        #indexing example: ("CPDM", 0, "incorrect", "high")

        idx = int(random.random() * len(earnings)) #random selection of bonus trial
        exp, money, acc, conf, item_id = earnings[idx] #assigning contents of earnings
        my_loop.addData("cpdm_bonus_amt", money) #save bonus amount to output
        my_loop.addData("cpdm_bonus_acc", acc) #save bonus trial accuracy to output
        my_loop.addData("cpdm_bonus_conf", conf) #save bonus trial confidence to output
        my_loop.addData("cpdm_bonus_item#", item_id) #save bonus trial item # to output

        acc_color = []

        if acc == "CORRECT": #set text color accordiong to bonus trial accuracy
            acc_color = "darkseagreen"
        else:
            acc_color = "salmon"

        # Print the bonus to the log, just in case
        print("Bonus:")
        print(money) # What the participant gets
        print("for choosing")
        print(acc)
        print("with confidence")
        print(conf)

        # Create a file that has all of the bonuses
        # Put into a higher directory containing only bonuses
        filename = u'../../../datasets/SDDM/bonus'

        if not os.path.exists(filename):
            os.makedirs(filename)

        os.chdir(filename)

        # Remove the participant's task from participant's name -- that is, only get the last four characters
        participant_name = expInfo['participant'][-4:]

        # Create the bonus "phrase" that will go into the file
        bonus_filename = "bonus_all_" + participant_name + expInfo['session'] + ".txt"

        # If the file already exists, append to the end. If not, create new file
        f = open(bonus_filename, "a")

        # Write the bonus phrase
        bonus_phrase = "CPDM bonus is: " + str(money) + " for choosing " + acc + " with confidence " + str(conf) + "\n"
        f.write(bonus_phrase)
        f.close()
    TextComponent cpdm_bonus_thanks_txt
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Thank you for participating in the Confidence and Perceptual Decision Making Task!
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    TextComponent cpdm_bonus_earnings_txt
      disabled = True
      letterHeight = 0.04
      pos = (0, 0.10)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = In the randomly selected trial you earned
      wrapWidth = 1.25
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    TextComponent cpdm_bonus_amt_txt
      color = 0.7098, 0.2941, -0.7490
      disabled = True
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      text [set every repeat] = $str("$"+str(money))
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    TextComponent cpdm_bonus_answer_txt
      disabled = True
      letterHeight = 0.04
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text = Your answer was
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    TextComponent cpdm_bonus_acc_txt
      color [set every repeat] = $acc_color
      disabled = True
      letterHeight = 0.04
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
      text [set every repeat] = $acc
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    TextComponent cpdm_bonus_and_txt
      disabled = True
      letterHeight = 0.04
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = and
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    TextComponent cpdm_bonus_conf_txt
      color = 0.0588, 0.6157, 0.9608
      disabled = True
      letterHeight = 0.04
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $conf + " CONFIDENCE"
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    TextComponent cpdm_bonus_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to end.
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    KeyboardComponent cpdm_bonus_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine BPET_setup
  Routine cpdm_instr1
  Routine cpdm_instr2
  Routine cpdm_instr3
  Routine cpdm_instr4
  Routine cpdm_pract_instr
  Routine cpdm_init_fix
  LoopInitiator cpdm_pract_trials loopType="TrialHandler"
    conditionsFile = cpdm_practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'task_name': 'cpdm', 'gabor_orient': 2.5, 'gabor_contrast': 0.025, 'run_dimension': 'practice'},
      {'task_name': 'cpdm', 'gabor_orient': 2, 'gabor_contrast': 0.05, 'run_dimension': 'practice'},
      {'task_name': 'cpdm', 'gabor_orient': 0, 'gabor_contrast': 0.2, 'run_dimension': 'practice'},
      {'task_name': 'cpdm', 'gabor_orient': -2, 'gabor_contrast': 0.25, 'run_dimension': 'practice'},
      {'task_name': 'cpdm', 'gabor_orient': -2.5, 'gabor_contrast': 0.1, 'run_dimension': 'practice'}]
    Routine cpdm_pract_trial
    Routine cpdm_pract_iti
  LoopTerminator cpdm_pract_trials
  Routine cpdm_trial_instr
  LoopInitiator condition_runs loopType="TrialHandler"
    conditionsFile = cpdm_run_type.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'cpdm_run_dimension': 'high_vol_low_risk'},
      {'cpdm_run_dimension': 'high_vol_high_risk'},
      {'cpdm_run_dimension': 'low_vol_low_risk'},
      {'cpdm_run_dimension': 'low_vol_high_risk'}]
    Routine cpdm_run_setter
    Routine cpdm_loop_instr
    Routine cpdm_init_fix
    LoopInitiator cpdm_trials loopType="TrialHandler"
      conditionsFile = $run_schedule
      loopType = random
      nReps = 1
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      Routine cpdm_trial
      Routine cpdm_trial_iti
    LoopTerminator cpdm_trials
    Routine cpdm_run_break
  LoopTerminator condition_runs
  Routine BPET_end
  Routine cpdm_bonus
