PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Data filename = u'../../../datasets/SDDM/CRDM/24-%s/%s_%s' % (expInfo['participant'], expInfo['participant'], expInfo['session'])
  Experiment info = {'participant': 'CRDM', 'session': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Use version = 2023.2.2
  Window size (pixels) = [2560, 1440]
  expName = CRDM
  keyboardBackend = Pyglet
  runMode = 1
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Routines
  Routine BPET_setup
    RoutineSettingsComponent BPET_setup
      saveStartStop = False
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    CodeComponent BP_start
      Code Type = Py
      Begin Experiment:
        import serial
        ser = serial.Serial("COM5", 115200, timeout=1) #define serial port (always the same for this computer)
        ser.write("RR".encode()) #clear serial port
        ser.write("02".encode()) #begin BIOPAC recording at start of experiment
    CodeComponent ET_start
      Code Type = Py
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      Before Experiment:
        import os
        import platform
        import pylink
        import random
        import sys
        import time
        import numpy as np
        from numpy import (sin, cos, tan, log, log10, pi, average,
                           sqrt, std, deg2rad, rad2deg, linspace, asarray)
        #from numpy.random import random, randint, normal, shuffle, choice as randchoice
        from psychopy import locale_setup
        from psychopy import prefs
        from psychopy import clock, colors, core, data, event, gui, layout, logging, monitors, sound, visual
        from psychopy.constants import (NOT_STARTED, STARTED, PLAYING, PAUSED,
                                        STOPPED, FINISHED, PRESSED, RELEASED, FOREVER)
        from psychopy.hardware import keyboard
        from EyeLinkCoreGraphicsPsychoPy import EyeLinkCoreGraphicsPsychoPy
        from PIL import Image  # for preparing Host backdrop image
        from string import ascii_letters, digits

        # Set to True to run task in full screen mode
        # Easier to debug script in non-full screen mode
        full_screen = True
      Begin Experiment:
        class WrapTest(object):
            def __init__(self, el_tracker):
                self.msg = False
                self.el_tracker = el_tracker

            def eyetrack_flip(self, func):
                def wrap():
                    func()
                    if self.msg:
                        self.el_tracker.sendMessage('image_onset')
                        self.msg = False
                return wrap

        # Set up EDF data file name and local data folder
        #
        # EDF data filename should not exceed 8 alphanumeric characters
        # Use ONLY number 0-9, letters, & _ (underscore) in filename
        edf_fname = '{0}'.format(expInfo["participant"])

        # Prompt user to specify an EDF data filename
        # before opening fullscreen window
        dlg_title = 'Enter EDF File Name'
        dlg_prompt = 'Please enter a file name with 8 or fewer characters\n' + \
                     '[letters, numbers, and underscore].'

        # Loop until a valid filename
        while True:
            dlg = gui.Dlg(dlg_title)
            dlg.addText(dlg_prompt)
            dlg.addField('File Name:', edf_fname)
            # show dialog and wait for OK or Cancel
            ok_data = dlg.show()
            if dlg.OK:  # if ok_data is not None
                print('EDF data filename: {}'.format(ok_data[0]))
            else:
                print('user cancelled')
                core.quit()
                sys.exit()

            # get string entered by experimenter
            tmp_str = dlg.data[0]
            # strip trailing characters, ignore ".edf" extension
            edf_fname = tmp_str.rstrip().split('.')[0]

            # check if filename is valid (length <= 8 & no special char)
            allowed_char = ascii_letters + digits + '_'
            if not all([c in allowed_char for c in edf_fname]):
                print('ERROR: Invalid EDF filename')
            elif len(edf_fname) > 8:
                print('ERROR: EDF filename should not exceed 8 characters')
            else:
                break

        # Set up folder to store EDF data files and associated resources
        results_folder = 'results'
        if not os.path.exists(results_folder):
            os.makedirs(results_folder)

        # Download EDF data file from EyeLink Host PC to local hard
        # drive at end of each testing session, rename EDF to
        # include session start date/time
        time_str = time.strftime("_%Y_%m_%d_%H_%M", time.localtime())
        session_identifier = edf_fname + time_str

        # Create a folder for current testing session in "results" folder
        session_folder = os.path.join(results_folder, session_identifier)
        if not os.path.exists(session_folder):
            os.makedirs(session_folder)

        ## Step 1: Connect to EyeLink Host PC ----------------------------
        #
        # The Host IP address, by default, is "100.1.1.1".
        # "el_tracker" object created can be accessed through Pylink
        # Set Host PC address to "None" (without quotes) to run script in "Dummy Mode"
        el_tracker = pylink.EyeLink("100.1.1.1")
        wrapper = WrapTest(el_tracker)
        win.flip = wrapper.eyetrack_flip(win.flip)

        ## Step 2: Open an EDF data file on Host PC ----------------------------
        edf_file = edf_fname + ".EDF"
        try:
            el_tracker.openDataFile(edf_file)
        except RuntimeError as err:
            print('ERROR:', err)
            # close link if one is open
            if el_tracker.isConnected():
                el_tracker.close()
            core.quit()
            sys.exit()

        # Add header text to EDF file to identify current experiment name
        # This is OPTIONAL. If your text starts with "RECORDED BY " it will be
        # available in DataViewer's Inspector window by clicking
        # EDF session node in the top panel and looking for "Recorded By:"
        # field in the bottom panel of Inspector.
        preamble_text = 'RECORDED BY %s' % os.path.basename(__file__)
        el_tracker.sendCommand("add_file_preamble_text '%s'" % preamble_text)


        ## Step 3: Configure eye-tracker ----------------------------
        #
        # Put eye-tracker in offline mode before changing tracking parameters
        el_tracker.setOfflineMode()

        # Get software version:  1-EyeLink I, 2-EyeLink II, 3/4-EyeLink 1000,
        # 5-EyeLink 1000 Plus, 6-Portable DUO
        eyelink_ver = 6  # set version to 0, in case running in Dummy mode
        vstr = el_tracker.getTrackerVersionString()
        eyelink_ver = int(vstr.split()[-1].split('.')[0])
        # print out version info in shell
        print('Running experiment on %s, version %d' % (vstr, eyelink_ver))

        # File and Link data control
        # Eye events to save in EDF file, include everything by default
        file_event_flags = 'LEFT,RIGHT,FIXATION,SACCADE,BLINK,MESSAGE,BUTTON,INPUT'
        # Eye events to make available over link, include everything by default
        link_event_flags = 'LEFT,RIGHT,FIXATION,SACCADE,BLINK,BUTTON,FIXUPDATE,INPUT'
        # Sample data to save in EDF data file and to make available
        # over link, include 'HTARGET' flag to save head target sticker
        # data for supported eye trackers
        if eyelink_ver > 3:
            file_sample_flags = 'LEFT,RIGHT,GAZE,HREF,RAW,AREA,HTARGET,GAZERES,BUTTON,STATUS,INPUT'
            link_sample_flags = 'LEFT,RIGHT,GAZE,GAZERES,AREA,HTARGET,STATUS,INPUT'
        else:
            file_sample_flags = 'LEFT,RIGHT,GAZE,HREF,RAW,AREA,GAZERES,BUTTON,STATUS,INPUT'
            link_sample_flags = 'LEFT,RIGHT,GAZE,GAZERES,AREA,STATUS,INPUT'
        el_tracker.sendCommand("file_event_filter = %s" % file_event_flags)
        el_tracker.sendCommand("file_sample_data = %s" % file_sample_flags)
        el_tracker.sendCommand("link_event_filter = %s" % link_event_flags)
        el_tracker.sendCommand("link_sample_data = %s" % link_sample_flags)

        # Choose calibration type: H3, HV3, HV5, HV13 (HV = horizontal/vertical),
        el_tracker.sendCommand("calibration_type = HV9")
        # Set a gamepad button to accept calibration/drift check target
        # Needs a supported gamepad/button box connected to Host PC
        el_tracker.sendCommand("button_function 5 'accept_target_fixation'")
        ##when running, if issues with win, move to Begin Routine
        # Get native screen resolution used by PsychoPy
        scn_width, scn_height = win.size

        # Pass display pixel coordinates (left, top, right, bottom) to eye-tracker
        # see EyeLink Installation Guide, "Customizing Screen Settings"
        el_coords = "screen_pixel_coords = 0 0 %d %d" % (scn_width - 1, scn_height - 1)
        el_tracker.sendCommand(el_coords)

        # Write DISPLAY_COORDS message to EDF file
        # Data Viewer needs this info for proper visualization, see Data
        # Viewer User Manual, "Protocol for EyeLink Data to Viewer Integration"
        dv_coords = "DISPLAY_COORDS  0 0 %d %d" % (scn_width - 1, scn_height - 1)
        el_tracker.sendMessage(dv_coords)
      Begin Routine:
        ## Configure graphics environment (genv) for tracker calibration
        genv = EyeLinkCoreGraphicsPsychoPy(el_tracker, win)
        #print(genv)  # print out version number of CoreGraphics library
        # Set background and foreground colors for calibration target
        # in PsychoPy, (-1, -1, -1)=black, (1, 1, 1)=white, (0, 0, 0)=mid-gray
        foreground_color = (-1, -1, -1)
        background_color = win.color
        genv.setCalibrationColors(foreground_color, background_color)

        ## Set up calibration target
        #
        # Target could be a "circle" (default), "picture", "movie" clip,
        # or rotating "spiral". To configure type of calibration target, set
        # genv.setTargetType to "circle", "picture", "movie", or "spiral",
        #  e.g., genv.setTargetType('picture')
        #
        # Use gen.setPictureTarget() to set "picture" target
        # genv.setPictureTarget(os.path.join('images', 'fixTarget.bmp'))
        #
        # Use genv.setMovieTarget() to set "movie" target
        # genv.setMovieTarget(os.path.join('videos', 'calibVid.mov'))

        # Use picture as calibration target
        genv.setTargetType('picture')
        genv.setPictureTarget(os.path.join('images', 'fixTarget.bmp'))

        # Configure the size of the calibration target (in pixels)
        # this option applies only to "circle" and "spiral" targets
        # genv.setTargetSize(24)

        # Beeps to play during calibration, validation and drift correction
        # parameters: target, good, error
        #     target -- sound to play when target moves
        #     good -- sound to play on successful operation
        #     error -- sound to play on failure or interruption
        # Each parameter could be ''--default sound, 'off'--no sound, or a wav file
        genv.setCalibrationSounds('', '', '')

        # Request Pylink to use PsychoPy window opened above for calibration
        pylink.openGraphicsEx(genv)

        ## Helper functions for trial handling

        def show_msg(win, text, wait_for_keypress=True):
            """ Show task instructions on screen"""
            msg = visual.TextStim(win, text,
                                  color=genv.getForegroundColor(),
                                  wrapWidth=scn_width/2)
            msg.draw()
            win.flip()
            # wait indefinitely, terminates upon any key press
            if wait_for_keypress:
                event.waitKeys()
                #clear_screen(win)

        def retrieve_data():
            """ Retrieves EDF data file from Host PC
            file_to_retrieve: EDF on Host to download
            win: current window used by experimental script
            """
            el_tracker = pylink.getEYELINK()
            if el_tracker.isConnected():
                # Terminate current trial first if task terminated prematurely
                error = el_tracker.isRecording()
                if error == pylink.TRIAL_OK:
                    abort_trial()
                # Put tracker in Offline mode
                el_tracker.setOfflineMode()
                # Clear Host PC screen and wait for 500 ms
                el_tracker.sendCommand('clear_screen 0')
                pylink.msecDelay(500)
                # Close EDF data file on Host
                el_tracker.closeDataFile()
                # Show file transfer message onscreen
                msg = 'Transferring data...'
                show_msg(win, msg, wait_for_keypress=False)
                # Download EDF data file from Host PC to local data folder
                # Parameters: source_file_on_the_host, destination_file_on_local_drive
                local_edf = os.path.join(session_folder, session_identifier + '.EDF')
                try:
                    el_tracker.receiveDataFile(edf_file, local_edf)
                except RuntimeError as error:
                    print('ERROR:', error)
                # Close link to eye-tracker.
                el_tracker.close()


        def abort_trial():
            """Ends recording """
            el_tracker = pylink.getEYELINK()
            # Stop recording
            if el_tracker.isRecording():
                # add 100 ms to catch final trial events
                pylink.pumpDelay(100)
                el_tracker.stopRecording()
            # Send message to clear Data Viewer screen
            bgcolor_RGB = (116, 116, 116)
            el_tracker.sendMessage('!V CLEAR %d %d %d' % bgcolor_RGB)
            # Send message to mark trial end
            el_tracker.sendMessage('TRIAL_RESULT %d' % pylink.TRIAL_ERROR)

            return pylink.TRIAL_ERROR

        '''
        def run_trial(trial_pars, trial_index):
            """ Helper function specifying events occuring in a single trial
            trial_pars - a list containing trial parameters, e.g.,
                        ['cond_1', 'img_1.jpg']
            trial_index - record order of trial presentation
            """
            # Unpacking trial parameters
            cond, pic = trial_pars

            # Load image to display, stretch image to fill full screen
            img = visual.ImageStim(win,
                                   image=os.path.join('images', pic),
                                   size=(scn_width, scn_height))

            # Get reference to currently active EyeLink connection
            el_tracker = pylink.getEYELINK()

            # Put tracker in offline mode first
            el_tracker.setOfflineMode()

            # Clear host screen before drawing backdrop
            el_tracker.sendCommand('clear_screen 0')

            # send a "TRIALID" message to mark start of trial, see Data
            # Viewer User Manual, "Protocol for EyeLink Data to Viewer Integration"
            el_tracker.sendMessage('TRIALID %d' % trial_index)

            # Record_status_message : show some info on Host PC
            # Here we show how many trials have been tested
            status_msg = 'TRIAL number %d' % trial_index
            el_tracker.sendCommand("record_status_message '%s'" % status_msg)

            # Drift check
            # we recommend drift-checking at the beginning of each trial
            # doDriftCorrect() function requires target position in integers
            # Last two arguments:
            # draw_target (1-default, 0-draw the target then call doDriftCorrect)
            # allow_setup (1-press ESCAPE to recalibrate, 0-not allowed)
            #
            # Skip drift-check if running in Dummy Mode
            while not dummy_mode:
                # Terminate task if no longer connected to eye-tracker or
                # User pressed Ctrl-C to terminate task
                if (not el_tracker.isConnected()) or el_tracker.breakPressed():
                    terminate_task()
                    return pylink.ABORT_EXPT

                # Drift-check and re-do camera setup if ESCAPE is pressed
                try:
                    error = el_tracker.doDriftCorrect(int(scn_width/2.0),
                                                      int(scn_height/2.0), 1, 1)
                    # Break following a success drift-check
                    if error is not pylink.ESC_KEY:
                        break
                except:
                    pass

            # Put eye-tracker in idle/offline mode before recording
            el_tracker.setOfflineMode()

            # Start recording
            # arguments: sample_to_file, events_to_file, sample_over_link,
            # event_over_link (1-yes, 0-no)
            try:
                el_tracker.startRecording(1, 1, 1, 1)
            except RuntimeError as error:
                print("ERROR:", error)
                abort_trial()
                return pylink.TRIAL_ERROR

            # Allocate time for eye-tracker to cache samples
            pylink.pumpDelay(100)

            # Show image and log message to mark onset of image
            #clear_screen(win)
            #img.draw()
            #win.flip()
            el_tracker.sendMessage('image_onset')
            img_onset_time = core.getTime()  # record image onset time

            # Send message to clear Data Viewer screen, ready for
            # drawing pictures during visualization
            bgcolor_RGB = (116, 116, 116)
            el_tracker.sendMessage('!V CLEAR %d %d %d' % bgcolor_RGB)

            # Send over message to specify where image is stored relative
            # to EDF data file, see Data Viewer User Manual, "Protocol for
            # EyeLink Data to Viewer Integration"
            bg_image = '../../images/' + pic
            imgload_msg = '!V IMGLOAD CENTER %s %d %d %d %d' % (bg_image,
                                                                int(scn_width/2.0),
                                                                int(scn_height/2.0),
                                                                int(scn_width),
                                                                int(scn_height))
            el_tracker.sendMessage(imgload_msg)

            # Send interest area messages to record in EDF data file
            # here we draw a rectangular IA, for illustration purposes
            # format: !V IAREA RECTANGLE <id> <left> <top> <right> <bottom> [label]
            # for all supported interest area commands, see Data Viewer Manual,
            # "Protocol for EyeLink Data to Viewer Integration"
            ia_pars = (1, left, top, right, bottom, 'screen_center')
            el_tracker.sendMessage('!V IAREA RECTANGLE %d %d %d %d %d %s' % ia_pars)

            # Show image for 5-secs or until the SPACEBAR is pressed
            event.clearEvents()  # clear cached PsychoPy events
            RT = -1  # keep track of response time
            get_keypress = False
            while not get_keypress:
                # Present picture for a maximum of 5 seconds
                if core.getTime() - img_onset_time >= 5.0:
                    el_tracker.sendMessage('time_out')
                    break

                # Abort current trial if eye-tracker no longer recording
                error = el_tracker.isRecording()
                if error is not pylink.TRIAL_OK:
                    el_tracker.sendMessage('tracker_disconnected')
                    abort_trial()
                    return error

                # Check keyboard events
                for keycode, modifier in event.getKeys(modifiers=True):
                    # Stop stimulus presentation when spacebar is pressed
                    if keycode == 'space':
                        # send over a message to log key press
                        el_tracker.sendMessage('key_pressed')

                        # get response time in ms, PsychoPy report time in sec
                        RT = int((core.getTime() - img_onset_time)*1000)
                        get_keypress = True

                    # Abort trial if "ESCAPE" is pressed
                    if keycode == 'escape':
                        el_tracker.sendMessage('trial_skipped_by_user')
                        # clear screen
                        clear_screen(win)
                        # abort trial
                        abort_trial()
                        return pylink.SKIP_TRIAL

                    # Terminate task if Ctrl-C
                    if keycode == 'c' and (modifier['ctrl'] is True):
                        el_tracker.sendMessage('terminated_by_user')
                        terminate_task()
                        return pylink.ABORT_EXPT

            # Clear screen
            clear_screen(win)
            el_tracker.sendMessage('blank_screen')
            # Send message to clear Data Viewer screen as well
            el_tracker.sendMessage('!V CLEAR 128 128 128')

            # Stop recording; add 100 msec to catch final events before stopping
            pylink.pumpDelay(100)
            el_tracker.stopRecording()

            # Record trial variables to EDF data file, for details, see Data
            # Viewer User Manual, "Protocol for EyeLink Data to Viewer Integration"
            el_tracker.sendMessage('!V TRIAL_VAR condition %s' % cond)
            el_tracker.sendMessage('!V TRIAL_VAR image %s' % pic)
            el_tracker.sendMessage('!V TRIAL_VAR RT %d' % RT)

            # Send a 'TRIAL_RESULT' message to mark end of trial, see Data
            # Viewer User Manual, "Protocol for EyeLink Data to Viewer Integration"
            el_tracker.sendMessage('TRIAL_RESULT %d' % pylink.TRIAL_OK)
        '''

        ## Step 5: Set up camera and calibrate eye-tracker ----------------------------

        # Show task instructions
        task_msg = 'Press Ctrl-C to if you need to quit the task early\n'
        task_msg = task_msg + '\nPress ENTER twice to calibrate tracker'
        show_msg(win, task_msg)

        try:
            el_tracker.doTrackerSetup()
        except RuntimeError as err:
            print("Error", err)
            el_tracker.exitCalibration()
  Routine crdm_instr1
    RoutineSettingsComponent crdm_instr1
      saveStartStop = False
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    CodeComponent crdm_instr1_py
      Code Type = Py
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      Before Experiment:
        ###code written by Mandy Renfro (2023)###
        import random
        exp_proceed = True
        earnings = []
        conf_resps = []

        confkey_map = {"2": "1", "3": "2", "j": "3", "k": "4", None: None} #for Cedrus box code mapping
      Begin Routine:
        #provides specific loop names for each of two interations of CRDM
        #to provide flexibility of crdm_pract_trial and crdm_trial routines
        practice_loop_name = "crdm_pract_trials"
        loop_name = "crdm_trials"
    TextComponent crdm_instr1_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Risk & Ambiguity Task *
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    TextComponent crdm_instr1_txt
      letterHeight = 0.04
      pos = (0, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        In this decision making task, you will be asked to make economic choices between:

        - A certain option
        OR
        - Playing a lottery

        Your choice for each trial will determine how much money you could earn if randomly selected as your bonus earnings trial.

        You will start this task with \$50 endowment. There are both gain and loss trials, where you could either win or lose money.
    TextComponent crdm_instr1_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_instr2
    RoutineSettingsComponent crdm_instr2
      saveStartStop = False
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    TextComponent crdm_instr2_lottname_txt
      letterHeight = 0.05
      pos = (-0.2, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = *Playing the Lottery*
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    TextComponent crdm_instr2_txt
      letterHeight = 0.04
      pos = (-0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        The lottery consists of an imaginary bag containing 100 poker chips, some red and some blue. To play, you pull a random chip from the bag.

        The figure on the right represents the proportion of blue and red chips in the imaginary bag.

        In this example, most chips are blue (75 of 100) and fewer are red (25 of 100).
    ImageComponent crdm_instr2_img
      image = images/risk_blue_75.bmp
      pos = (0.6, 0)
      saveStartStop = False
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent crdm_instr2_lott0_txt
      letterHeight = 0.04
      pos = (0.6, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$0
      wrapWidth = 1.5
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    TextComponent crdm_instr2_lott20_txt
      letterHeight = 0.04
      pos = (0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$20
      wrapWidth = 1.5
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    TextComponent crdm_instr2_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_instr3
    RoutineSettingsComponent crdm_instr3
      saveStartStop = False
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    TextComponent crdm_instr3_lottname_txt
      letterHeight = 0.05
      pos = (-0.2, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = *Playing the Lottery*
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    TextComponent crdm_instr3_txt
      letterHeight = 0.04
      pos = (-0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Each question will ask you to choose between a certain gain/loss of \$5 for sure OR playing a lottery for a chance to earn/lose another amount.

        In this example, you have a 75% chance of pulling a blue chip and winning \$20. Conversely, you have a 25% chance of pulling a red chip and receiving \$0.

        The value for each color will change from bag to bag. Read the \$ amount above the red and below the blue to know the value of each chip color.
    ImageComponent crdm_instr3_img
      image = images/risk_blue_75.bmp
      pos = (0.6, 0)
      saveStartStop = False
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent crdm_instr3_lott0_txt
      letterHeight = 0.04
      pos = (0.6, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$0
      wrapWidth = 1.5
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    TextComponent crdm_instr3_lott20_txt
      letterHeight = 0.04
      pos = (0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$20
      wrapWidth = 1.5
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    TextComponent crdm_instr3_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr3_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_instr4
    RoutineSettingsComponent crdm_instr4
      saveStartStop = False
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    TextComponent crdm_instr4_lottname_txt
      letterHeight = 0.05
      pos = (-0.2, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = *Playing the Lottery*
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    TextComponent crdm_instr4_txt
      letterHeight = 0.04
      pos = (-0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        For some lotteries, information about the contents of the bag may be partially hidden.

        In this example, the bag has at least 25 blue chips and 25 red chips. However, the color of the remaining 50 chips is unknown. The remaining 50 chips could be all red, all blue, or any combination of the two.
    ImageComponent crdm_instr4_img
      image = images/ambig_50.bmp
      pos = (0.6, 0)
      saveStartStop = False
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent crdm_instr4_lott0_txt
      letterHeight = 0.04
      pos = (0.6, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$0
      wrapWidth = 1.5
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    TextComponent crdm_instr4_lott20_txt
      letterHeight = 0.04
      pos = (0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$20
      wrapWidth = 1.5
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    TextComponent crdm_instr4_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr4_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_instr5
    RoutineSettingsComponent crdm_instr5
      saveStartStop = False
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    TextComponent crdm_instr5_txt
      letterHeight = 0.035
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = The lottery bag will appear in the center of the screen. The certain dollar amount will be presented on either the right or left side of the bag. In this example, the certain \$5 would be the left option, and the lottery would be the right option:
      wrapWidth = 1.5
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    ImageComponent crdm_instr5_img
      image = images/risk_blue_75.bmp
      pos = (0, -0.05)
      saveStartStop = False
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent crdm_instr5_lott_top_txt
      letterHeight = 0.04
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$0
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    TextComponent crdm_instr5_lott_bot_txt
      letterHeight = 0.04
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$20
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    TextComponent crdm_instr5_sure_txt
      letterHeight = 0.06
      pos = (-0.5, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = \$5
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    TextComponent crdm_instr5_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr5_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_instr6
    RoutineSettingsComponent crdm_instr6
      saveStartStop = False
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    TextComponent crdm_instr6_txt
      letterHeight = 0.04
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        When the green circle appears, use the color buttons on the response pad to indicate your choice:

        Press YELLOW to select the left option
        Press GREEN to select the right option
    ImageComponent crdm_instr6_img
      image = images/response_box1-2.png
      pos = (0, -0.1)
      saveStartStop = False
      size = (0.6, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent crdm_instr6_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr6_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_instr7
    RoutineSettingsComponent crdm_instr7
      saveStartStop = False
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    TextComponent crdm_instr7_txt
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.35
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      text:
        After each choice, you will be asked to rate your choice confidence.
        1 indicates you couldn't decide which option you preferred and chose at random, while 4 indicates total certainty in your choice. Use the number keys on the response pad to indicate your confidence:
    ImageComponent crdm_instr7_img
      image = images/response_box1-2.png
      pos = (0, -0.15)
      saveStartStop = False
      size = (0.6, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent crdm_instr7_left_txt
      letterHeight = 0.035
      pos = (-0.575, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        1 - Not at all confident
         2 - Less confident
    TextComponent crdm_instr7_right_txt
      letterHeight = 0.035
      pos = (0.575, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        3 - Somewhat confident
         4 - Very confident
    TextComponent crdm_instr7_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr7_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_instr8
    RoutineSettingsComponent crdm_instr8
      saveStartStop = False
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    TextComponent crdm_instr8_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Risk & Ambiguity Task *
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    TextComponent crdm_instr8_warn_txt
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Please remain engaged throughout the experiment and provide earnest, sincere responses for each trial. Remember, your choices could help you walk away with an additional bonus ranging from \$0 to \$100, depending on the seleced *bonus earnings* trial!

        Thank you for your participation!
    TextComponent crdm_instr8_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_instr8_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_pract_instr
    RoutineSettingsComponent crdm_pract_instr
      saveStartStop = False
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    TextComponent crdm_pract_instr_name_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Risk & Ambiguity Task *
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    TextComponent crdm_pract_instr_txt
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        Let's practice!

        When the green circle appears, indicate your decision by pressing 1 for the left option and 2 for the right option. Next, you will rate your confidence.

        Please be sure to answer both the task and confidence prompts, or the trial will be considered incomplete.
    TextComponent crdm_pract_instr_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to begin.
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    KeyboardComponent crdm_pract_instr_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_init_fix
    RoutineSettingsComponent crdm_init_fix
      saveStartStop = False
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    PolygonComponent crdm_init_fix_poly
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine crdm_pract_trial
    RoutineSettingsComponent crdm_pract_trial
      saveStartStop = False
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    CodeComponent crdm_pract_trial_py
      Code Type = Py
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      Begin Experiment:
        #position of certain amount option
        sure_pos = []
        sure_resp = []
        crdm_msg = ""

        #stimuli positions and respective responses
        #left/right screen locations
        pos = [[-0.5, 0], [0.5, 0]]
        resp = ["4", "5"] #4 = left, 5 = right
      Begin Routine:
        my_loop = eval(practice_loop_name)

        #random index for certain outcome position and response
        idx = random.randint(0,1)
        sure_pos = pos[idx]
        sure_resp = resp[idx]
      End Routine:
        pract_key = crdm_pract_trial_resp.keys
        pract_sure_key = crdm_pract_trial_resp.corr

        my_loop.addData("crdm_trial_type", "practice")
    ImageComponent crdm_pract_trial_img
      image [set every repeat] = $"images/" + crdm_img
      saveStartStop = False
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent crdm_pract_trial_lott_top_txt
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $str("$"+str(crdm_lott_top))
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    TextComponent crdm_pract_trial_lott_bot_txt
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $str("$"+str(crdm_lott_bot))
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    TextComponent crdm_pract_trial_sure_amt_txt
      letterHeight = 0.06
      pos [set every repeat] = sure_pos
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text [set every repeat]:
        $str("$"+str(crdm_sure_amt))
    PolygonComponent GRFX_fix2
      fillColor = [0,0,0]
      lineColor = [0,0,0]
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
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    PolygonComponent crdm_pract_trial_cue
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, 1.0000, -1.0000
      saveStartStop = False
      shape = circle
      size = (0.04, 0.04)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
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    KeyboardComponent crdm_pract_trial_resp
      allowedKeys = '4', '5'
      correctAns = $sure_resp
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine crdm_feedback
    RoutineSettingsComponent crdm_feedback
      saveStartStop = False
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    CodeComponent crdm_feedback_py
      Code Type = Py
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      Begin Routine:
        #Ss did not respond
        if len(key) == 0:
            #crdm_msg = "No Response"
            feedback_img = "images/FB_nonresp.png"
            #Ss chose sure $5
        elif sure_key:
            #crdm_msg = "You chose: CERTAIN $" + str(sure_amt)
            feedback_img = "images/FB_cert.png"
            #Ss chose lottery
        else:
            #crdm_msg = "You chose: LOTTERY"
            feedback_img = "images/FB_lott.png"
    CodeComponent BP_fb_trig
      Code Type = Py
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      Begin Routine:
        ser.write("40".encode()) #feedback marker
        ser.flush()
    ImageComponent crdm_FB_img
      image [set every repeat] = $feedback_img
      saveStartStop = False
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent crdm_feedback_txt
      disabled = True
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $crdm_msg
      wrapWidth = 1.5
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  Routine crdm_conf
    RoutineSettingsComponent crdm_conf
      saveStartStop = False
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    CodeComponent crdm_conf_py
      Code Type = Py
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      Begin Routine:
        if len(key) == 0: #Ss did not respond
            continueRoutine = False

        #set default gray for all four response boxes
        conf1_color = [0, 0, 0]
        conf2_color = [0, 0, 0]
        conf3_color = [0, 0, 0]
        conf4_color = [0, 0, 0]
      Each Frame:
        #resp is received
        conf_key = crdm_conf_resp.keys
        if len(conf_key) == 1:
            conf_key = confkey_map[conf_key[-1]]
            if conf_key == "1": #not at all confident
                #change box color to indicate selection
                conf1_color = "darkgray"
                conf2_color = [0,0,0]
                conf3_color = [0,0,0]
                conf4_color = [0,0,0]
            elif conf_key == "2": #less confident
                conf1_color = [0,0,0]
                conf2_color = "darkgray"
                conf3_color = [0,0,0]
                conf4_color = [0,0,0]
            elif conf_key == "3": #somewhat confident
                conf1_color = [0,0,0]
                conf2_color = [0,0,0]
                conf3_color = "darkgray"
                conf4_color = [0,0,0]
            elif conf_key == "4": #very confident
                conf1_color = [0,0,0]
                conf2_color = [0,0,0]
                conf3_color = [0,0,0]
                conf4_color = "darkgray"
      End Routine:
        my_loop.addData("crdm_conf", conf_key)

        if len(conf_key) == 1:
            if type(conf_key) == list:
                if conf_key[-1] in ["1", "2", "3", "4"]:
                    conf_resps.append(conf_key)
            else:
                if conf_key in ["1", "2", "3", "4"]:
                    conf_resps.append(conf_key)
    CodeComponent BP_conf_trig
      Code Type = Py
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      Begin Routine:
        ser.write("80".encode()) #confidence trial marker
        ser.flush()
      End Routine:
        ser.write("00".encode()) #clear all channels
    TextComponent crdm_conf_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = How confident are you in your choice?
      wrapWidth = 1.5
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    PolygonComponent crdm_conf1
      fillColor [set every frame] = $conf1_color
      lineWidth = 10
      pos = (-0.6, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent crdm_conf1_txt
      letterHeight = 0.04
      pos = (-0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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      text:
        Not at all
        confident

        1
    PolygonComponent crdm_conf2
      fillColor [set every frame] = $conf2_color
      lineWidth = 10
      pos = (-0.2, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent crdm_conf2_txt
      letterHeight = 0.04
      pos = (-0.2, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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      text:
        Less
        confident

        2
    PolygonComponent crdm_conf3
      fillColor [set every frame] = $conf3_color
      lineWidth = 10
      pos = (0.2, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent crdm_conf3_txt
      letterHeight = 0.04
      pos = (0.2, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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      text:
        Somewhat
        confident

        3
    PolygonComponent crdm_conf4
      fillColor [set every frame] = $conf4_color
      lineWidth = 10
      pos = (0.6, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent crdm_conf4_txt
      letterHeight = 0.04
      pos = (0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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      text:
        Very
        confident

        4
    KeyboardComponent crdm_conf_resp
      allowedKeys = '2', '3', 'j', 'k'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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  Routine crdm_pract_iti
    RoutineSettingsComponent crdm_pract_iti
      saveStartStop = False
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    CodeComponent crdm_pract_iti1_py
      Code Type = Py
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      Begin Routine:
        #3 CRDM practice trials
        if crdm_pract_trials.thisTrialN == 2:
            continueRoutine = False
    PolygonComponent crdm_pract_iti1_poly
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine crdm_trial_instr
    RoutineSettingsComponent crdm_trial_instr
      saveStartStop = False
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    CodeComponent crdm_trial_instr_py
      Code Type = Py
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      Begin Routine:
        #Task QC check variables
        task_resps = []
        conf_resps = []
        catch_trials = []

        iti_list = [random.random() for i in range(160)]
        s = sum(iti_list)
        iti_list = [i*160/s for i in iti_list]
    TextComponent crdm_trial_instr_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Risk & Ambiguity Task *
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    TextComponent crdm_trial_instr_txt
      letterHeight = 0.04
      pos = (0, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        Now that you have practiced, the actual task will begin.

        Make your choice between the certain outcome and lottery as soon as you see the green circle. You will have 4 seconds to consider and 2 seconds to respond. You will then have an additional 2 seconds to rate your choice confidence.

        When a white cross appears, please focus your attention on the center of the screen.
    TextComponent crdm_trial_instr_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to begin.
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    KeyboardComponent crdm_trial_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_trial
    RoutineSettingsComponent crdm_trial
      saveStartStop = False
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    CodeComponent crdm_trial_py
      Code Type = Py
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      Begin Experiment:
        #used in variable ITI
        delta_time = 0
        #position of certain amount option
        sure_pos = []
        sure_resp = []
        crdm_msg = ""

        #stimuli positions and respective responses
        #left/right screen locations
        pos = [[-0.5, 0], [0.5, 0]]
        resp = ["4", "5"] #4 = left, 5 = right
      Begin Routine:
        #variable for saving data
        my_loop = eval(loop_name)
        stop_timer = None
        stopped_time = 0
        conf_key = []

        #random index for certain outcome position and response
        idx = random.randint(0,1)
        sure_pos = pos[idx]
        sure_resp = resp[idx]
      Each Frame:
        #Ss responded
        if len(crdm_trial_resp.keys) == 1:
            if stop_timer == None:
                stop_timer = core.Clock()
            else:
                if stop_timer.getTime() >= 0.5:
                    continueRoutine = False
      End Routine:
        key = crdm_trial_resp.keys #variable for feedback routine
        sure_key = crdm_trial_resp.corr #1 if certain $ selected
        my_loop.addData("crdm_trial_type", "task")

        #delta time is leftover time excluding rt
        if type(crdm_trial_resp.rt) is list or crdm_trial_resp.rt >= 2 - 0.5:
            delta_time = 0
        else:
            delta_time = max(0, 2 - (crdm_trial_resp.rt + stopped_time))

        #response received
        if len(key) == 1:
            if sure_key == 1: #sure option
                #-1 is placeholder for lott_outcome
                earnings.append(("sure", crdm_sure_amt, crdm_img, crdm_lott_top, crdm_lott_bot, crdm_win_side, crdm_domain))
                my_loop.addData("crdm_choice", 0)
                my_loop.addData("crdm_choice2", "sure")
            else: #lottery option
                #record Ss choice
                my_loop.addData("crdm_choice", 1)
                my_loop.addData("crdm_choice2", "lott")
                earnings.append(("lott", "?", crdm_img, crdm_lott_top, crdm_lott_bot, crdm_win_side, crdm_domain))
    CodeComponent BP_trial_trig
      Code Type = Py
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      Begin Routine:
        ser.write("20".encode()) #task trial marker
        ser.flush()
    CodeComponent ET_record
      Code Type = Py
      Begin Experiment:
        et_trial_ct = 0 #trial count for eye tracker display/recording
      Begin Routine:
        et_trial_ct += 1

        # Get reference to currently active EyeLink connection
        el_tracker = pylink.getEYELINK()
        wrapper.el_tracker = el_tracker
        wrapper.msg = True

        # Put tracker in offline mode first
        el_tracker.setOfflineMode()

        # Clear host screen before drawing backdrop
        #el_tracker.sendCommand('clear_screen 0')


        # Use the code commented below to convert the image and send the backdrop
        im = Image.open(os.path.join('images','crdm_screen.png'))  # read image with PIL
        im = im.resize((scn_width, scn_height))
        img_pixels = im.load()  # access the pixel data of the image
        pixels = [[img_pixels[i, j] for i in range(scn_width)]
                  for j in range(scn_height)]
        el_tracker.bitmapBackdrop(scn_width, scn_height, pixels,
                                  0, 0, scn_width, scn_height,
                                  0, 0, pylink.BX_MAXCONTRAST)

        # Record_status_message : show some info on Host PC
        # Here we show how many trials have been tested
        status_msg = 'TRIAL NO. %d' % et_trial_ct
        el_tracker.sendCommand("record_status_message '%s'" % status_msg)

        # Send a "TRIALID" message to mark start of trial, see Data
        # Viewer User Manual, "Protocol for EyeLink Data to Viewer Integration"
        el_tracker.sendMessage('TRIALID %d' % et_trial_ct)
        trl_onset_time = core.getTime()  #get trial onset time
        el_tracker.sendMessage('!V TRIAL_VAR trial_onset %s' % trl_onset_time) # record trial onset

        # Start recording
        # arguments: sample_to_file, events_to_file, sample_over_link, event_over_link (1-yes, 0-no)
        el_tracker.startRecording(1, 1, 1, 1)

        # Allocate time for eye-tracker to cache samples
        pylink.pumpDelay(100)
      End Routine:
        el_tracker.sendMessage('!V TRIAL_VAR resp_key %s' % crdm_trial_resp.keys) # record trial response
        el_tracker.sendMessage('END_TRIAL')
        # Stop recording; add 100 msec to catch final events before stopping
        pylink.pumpDelay(100)
        el_tracker.stopRecording()

        # Send a 'TRIAL_RESULT' message to mark end of trial, see Data
        # Viewer User Manual, "Protocol for EyeLink Data to Viewer Integration"
        el_tracker.sendMessage('TRIAL_RESULT %d' % pylink.TRIAL_OK)
    ImageComponent crdm_trial_img
      image [set every repeat] = $"images/" + crdm_img
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent crdm_trial_lott_top
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $str("$"+str(crdm_lott_top))
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    TextComponent crdm_trial_lott_bot
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $str("$"+str(crdm_lott_bot))
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    TextComponent crdm_trial_sure_amt
      letterHeight = 0.06
      pos [set every repeat] = sure_pos
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $str("$"+str(crdm_sure_amt))
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    PolygonComponent GRFX_fix
      fillColor = [0,0,0]
      lineColor = [0,0,0]
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
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    PolygonComponent crdm_trial_cue
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, 1.0000, -1.0000
      shape = circle
      size = (0.04, 0.04)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
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    KeyboardComponent crdm_trial_resp
      allowedKeys = '4', '5'
      correctAns = $sure_resp
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine crdm_trials_iti
    RoutineSettingsComponent crdm_trials_iti
      saveStartStop = False
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    CodeComponent crdm_trials_iti1_py
      Code Type = Py
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      Begin Routine:
        #variable ITI for non-practice trials
        iti_time = iti_list[my_loop.thisIndex] + delta_time
        #160 trials
        if crdm_trials.thisTrialN == 159:
            continueRoutine = False
      End Routine:
        #record delta time
        my_loop.addData("crdm_delta_time", delta_time)
        #record iti time
        my_loop.addData("crdm_iti_time", iti_time)
    PolygonComponent crdm_trials_iti1_poly
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_time
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  Routine crdm_end
    RoutineSettingsComponent crdm_end
      saveStartStop = False
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        #indexing examples
        #certain chosen - ("sure", crdm_sure_amt, crdm_img, crdm_lott_top, crdm_lott_bot, crdm_win_side, crdm_domain)
        #lotto chosen - ("lott", "?", crdm_img, crdm_lott_top, crdm_lott_bot, crdm_win_side, crdm_domain))

        earnings_text = ""
        idx = int(random.random() * len(earnings)) #random selection of bonus trial
        print(earnings[idx])
        choice, money, trial_img, top, bottom, winning_side, domain = earnings[idx]
        my_loop.addData("bonus_choice", choice) #record bonus trial choice

        # Describe trial image
        trial_img_desc = ""
        if trial_img == "ambig_24.bmp":
            trial_img_desc = "The lottery chosen was ambiguous, with 24% hidden (divided into two sections of 38%)."
        elif trial_img == "ambig_50.bmp":
            trial_img_desc = "The lottery chosen was ambiguous, with 50% hidden (divided into two sections of 25%)."
        elif trial_img == "ambig_74.bmp":
            trial_img_desc = "The lottery chosen was ambiguous, with 74% hidden (divided into two sections of 13%)."
        elif trial_img == "risk_blue_13.bmp":
            trial_img_desc = "The lottery chosen was risky, with red having 87% probability and blue having 13% probability."
        elif trial_img == "risk_blue_25.bmp":
            trial_img_desc = "The lottery chosen was risky, with red having 75% probability and blue having 25% probability."
        elif trial_img == "risk_blue_38.bmp":
            trial_img_desc = "The lottery chosen was risky, with red having 62% probability and blue having 38% probability."
        elif trial_img == "risk_blue_50.bmp":
            trial_img_desc = "The lottery chosen was risky, with red having 50% probability and blue having 50% probability."
        elif trial_img == "risk_blue_75.bmp":
            trial_img_desc = "The lottery chosen was risky, with red having 25% probability and blue having 75% probability."
        elif trial_img == "risk_red_13.bmp":
            trial_img_desc = "The lottery chosen was risky, with red having 13% probability and blue having 87% probability."
        elif trial_img == "risk_red_25.bmp":
            trial_img_desc = "The lottery chosen was risky, with red having 25% probability and blue having 75% probability."
        elif trial_img == "risk_red_38.bmp":
            trial_img_desc = "The lottery chosen was risky, with red having 38% probability and blue having 62% probability."
        elif trial_img == "risk_red_50.bmp":
            trial_img_desc = "The lottery chosen was risky, with red having 50% probability and blue having 50% probability."
        elif trial_img == "risk_red_75.bmp":
            trial_img_desc = "The lottery chosen was risky, with red having 75% probability and blue having 25% probability."

        #text for bonus payment screen
        if choice == "sure": ##Ss chose certain $5
            earnings_text = "A certain $" + str(money) # "In the randomly selected trial, you chose: A CERTAIN $" + str(money)
        else: ##Ss chose lottery
            earnings_text = "Play the lottery! Draw a chip from the bag with the red amount being $" + str(top) + " and the blue amount being $" + str(bottom) + ".\n" + trial_img_desc # "In the randomly selected trial, you chose: \n \n PLAY THE LOTTERY! \n \n You will now draw a chip from the lottery bag with these possible values. \n \n Good luck!"

        # Print the bonus to the log, just in case
        print("Bonus:")
        print(earnings_text)
        print("Top: ", top)
        print("Bottom: ", bottom)
        print("Choice: ", choice)

        # Create a file that has all of the bonuses
        # Put into a higher directory containing only bonuses
        filename = u'../../../datasets/SDDM/bonus'

        if not os.path.exists(filename):
            os.makedirs(filename)

        os.chdir(filename)

        # Remove the participant's task from participant's name -- that is, only get the last four characters
        participant_name = expInfo['participant'][-4:]

        # Create the bonus "phrase" that will go into the file
        bonus_filename = "bonus_all_" + participant_name + expInfo['session'] + ".txt"

        # If the file already exists, append to the end. If not, create new file
        f = open(bonus_filename, "a")

        # Write the bonus phrase
        bonus_phrase = "CRDM bonus is: " + earnings_text + "\n"
        f.write(bonus_phrase)
        f.close()
    TextComponent crdm_end_title_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = * Risk & Ambiguity Task *
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    TextComponent crdm_end_txt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.35
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      text:
        You have completed the Risk & Ambiguity Task!
    TextComponent crdm_end_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent crdm_end_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_term_check
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    UnknownComponent crdm_term_check_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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    UnknownComponent crdm_term_check_3
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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    CodeComponent crdm_term_check_py
      Code Type = Py
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      Begin Routine:
        if exp_proceed == False:
            core.quit()
  Routine crdm_bonus
    RoutineSettingsComponent crdm_bonus
      disabled = True
      saveStartStop = False
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    CodeComponent crdm_bonus_py
      Code Type = Py
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      Begin Routine:
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    ImageComponent crdm_bonus_img
      image [set every repeat] = $"images/" + trial_img
      pos = (0.6, -0.1)
      saveStartStop = False
      size = (0.3, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent crdm_bonus_thanks_txt
      color = 0.7098, 0.2941, -0.7490
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Thank you for participating in the Risk & Ambiguity Task!
      wrapWidth = 1.5
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    TextComponent crdm_bonus_sure_txt
      font = Ariel
      letterHeight = 0.04
      pos = (0.4, -0.075)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $str("$"+str(money))
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    TextComponent crdm_bonus_box
      letterHeight = 0.04
      pos = (-0.20, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $earnings_text
      wrapWidth = 1
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    TextComponent crdm_bonus_lott_top
      letterHeight = 0.04
      pos = (0.6, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $str("$"+str(top))
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    TextComponent crdm_bonus_lott_bot
      letterHeight = 0.04
      pos = (0.6, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $str("$"+str(bottom))
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    TextComponent crdm_bonus_space_txt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to end
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    KeyboardComponent crdm_bonus_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine crdm_pract_feedback
    RoutineSettingsComponent crdm_pract_feedback
      saveStartStop = False
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    CodeComponent crdm_pract_feedback_py
      Code Type = Py
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      Begin Routine:
        #Ss did not respond
        print(pract_key)
        if len(pract_key) == 0:
            #crdm_msg = "No Response"
            feedback_img = "images/FB_nonresp.png"
            #Ss chose sure $5
        elif pract_sure_key:
            #crdm_msg = "You chose: CERTAIN $" + str(sure_amt)
            feedback_img = "images/FB_cert.png"
            #Ss chose lottery
        else:
            #crdm_msg = "You chose: LOTTERY"
            feedback_img = "images/FB_lott.png"
    ImageComponent crdm_pract_FB_img
      image [set every repeat] = $feedback_img
      saveStartStop = False
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent crdm_pract_feedback_txt
      disabled = True
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $crdm_msg
      wrapWidth = 1.5
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  Routine crdm_pract_conf
    RoutineSettingsComponent crdm_pract_conf
      saveStartStop = False
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    CodeComponent crdm_pract_conf_py
      Code Type = Py
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      Begin Routine:
        #Ss did not respond
        if len(pract_key) == 0:
            continueRoutine = False

        #set default gray for all four response boxes
        conf1_color = [0, 0, 0]
        conf2_color = [0, 0, 0]
        conf3_color = [0, 0, 0]
        conf4_color = [0, 0, 0]
      Each Frame:
        #resp is received
        pract_conf_key = crdm_pract_conf_resp.keys
        if len(pract_conf_key) == 1:
            pract_conf_key = confkey_map[pract_conf_key[-1]]
            #not at all confident
            if pract_conf_key == "1":
                #change box color to indicate selection
                conf1_color = "darkgray"
                conf2_color = [0,0,0]
                conf3_color = [0,0,0]
                conf4_color = [0,0,0]
            #less confident
            elif pract_conf_key == "2":
                conf1_color = [0,0,0]
                conf2_color = "darkgray"
                conf3_color = [0,0,0]
                conf4_color = [0,0,0]
            #somewhat confident
            elif pract_conf_key == "3":
                conf1_color = [0,0,0]
                conf2_color = [0,0,0]
                conf3_color = "darkgray"
                conf4_color = [0,0,0]
            #very confident
            elif pract_conf_key == "4":
                conf1_color = [0,0,0]
                conf2_color = [0,0,0]
                conf3_color = [0,0,0]
                conf4_color = "darkgray"
    TextComponent crdm_pract_conf_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = How confident are you in your choice?
      wrapWidth = 1.5
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    PolygonComponent crdm_pract_conf1
      fillColor [set every frame] = $conf1_color
      lineWidth = 10
      pos = (-0.6, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent crdm_pract_conf1_txt
      letterHeight = 0.04
      pos = (-0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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      text:
        Not at all
        confident

        1
    PolygonComponent crdm_pract_conf2
      fillColor [set every frame] = $conf2_color
      lineWidth = 10
      pos = (-0.2, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent crdm_pract_conf2_txt
      letterHeight = 0.04
      pos = (-0.2, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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      text:
        Less
        confident

        2
    PolygonComponent crdm_pract_conf3
      fillColor [set every frame] = $conf3_color
      lineWidth = 10
      pos = (0.2, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent crdm_pract_conf3_txt
      letterHeight = 0.04
      pos = (0.2, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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      text:
        Somewhat
        confident

        3
    PolygonComponent crdm_pract_conf4
      fillColor [set every frame] = $conf4_color
      lineWidth = 10
      pos = (0.6, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent crdm_pract_conf4_txt
      letterHeight = 0.04
      pos = (0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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      text:
        Very
        confident

        4
    KeyboardComponent crdm_pract_conf_resp
      allowedKeys = '2', '3', 'j', 'k'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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  Routine BPET_end
    RoutineSettingsComponent BPET_end
      saveStartStop = False
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    CodeComponent BP_close
      Code Type = Py
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      Begin Routine:
        ser.write("RR".encode()) #flush all channels
        ser.close() #close serial port
    CodeComponent ET_close
      Code Type = Py
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      Begin Routine:
        ## Step 7: Disconnect Eye Tracker and download EDF file ----------------------------
        retrieve_data()
Flow
  Routine BPET_setup
  Routine crdm_instr1
  Routine crdm_instr2
  Routine crdm_instr3
  Routine crdm_instr4
  Routine crdm_instr5
  Routine crdm_instr6
  Routine crdm_instr7
  Routine crdm_instr8
  Routine crdm_pract_instr
  Routine crdm_init_fix
  LoopInitiator crdm_pract_trials loopType="TrialHandler"
    conditionsFile = crdm_practice_with_loss.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'item': 1, 'crdm_sure_amt': 5, 'crdm_sure_p': 100, 'crdm_lott_top': 20, 'crdm_lott_bot': 0, 'crdm_lott_p': 13, 'crdm_amb_lev': 0, 'crdm_domain': 'gain', 'crdm_img': 'risk_red_13.bmp', 'crdm_win_side': 'top'},
      {'item': 2, 'crdm_sure_amt': -5, 'crdm_sure_p': 100, 'crdm_lott_top': 0, 'crdm_lott_bot': -50, 'crdm_lott_p': 25, 'crdm_amb_lev': 0, 'crdm_domain': 'loss', 'crdm_img': 'risk_blue_25.bmp', 'crdm_win_side': 'bottom'},
      {'item': 3, 'crdm_sure_amt': 5, 'crdm_sure_p': 100, 'crdm_lott_top': 40, 'crdm_lott_bot': 0, 'crdm_lott_p': 50, 'crdm_amb_lev': 74, 'crdm_domain': 'gain', 'crdm_img': 'ambig_74.bmp', 'crdm_win_side': 'top'}]
    Routine crdm_pract_trial
    Routine crdm_pract_feedback
    Routine crdm_pract_conf
    Routine crdm_pract_iti
  LoopTerminator crdm_pract_trials
  Routine crdm_trial_instr
  Routine crdm_init_fix
  LoopInitiator crdm_trials loopType="TrialHandler"
    conditionsFile = crdm_trials_with_loss.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'item': 1, 'crdm_sure_amt': 5, 'crdm_sure_p': 100, 'crdm_lott_top': 5, 'crdm_lott_bot': 0, 'crdm_lott_p': 13, 'crdm_amb_lev': 0, 'crdm_domain': 'gain', 'crdm_img': 'risk_red_13.bmp', 'crdm_win_side': 'top', 'crdm_catch_trial': 1},
      {'item': 2, 'crdm_sure_amt': 5, 'crdm_sure_p': 100, 'crdm_lott_top': 0, 'crdm_lott_bot': 8, 'crdm_lott_p': 13, 'crdm_amb_lev': 0, 'crdm_domain': 'gain', 'crdm_img': 'risk_blue_13.bmp', 'crdm_win_side': 'bottom', 'crdm_catch_trial': 1},
      {'item': 3, 'crdm_sure_amt': 5, 'crdm_sure_p': 100, 'crdm_lott_top': 20, 'crdm_lott_bot': 0, 'crdm_lott_p': 13, 'crdm_amb_lev': 0, 'crdm_domain': 'gain', 'crdm_img': 'risk_red_13.bmp', 'crdm_win_side': 'top', 'crdm_catch_trial': 1},
      {'item': 4, 'crdm_sure_amt': 5, 'crdm_sure_p': 100, 'crdm_lott_top': 0, 'crdm_lott_bot': 40, 'crdm_lott_p': 13, 'crdm_amb_lev': 0, 'crdm_domain': 'gain', 'crdm_img': 'risk_blue_13.bmp', 'crdm_win_side': 'bottom', 'crdm_catch_trial': 0},
      {'item': 5, 'crdm_sure_amt': 5, 'crdm_sure_p': 100, 'crdm_lott_top': 50, 'crdm_lott_bot': 0, 'crdm_lott_p': 13, 'crdm_amb_lev': 0, 'crdm_domain': 'gain', 'crdm_img': 'risk_red_13.bmp', 'crdm_win_side': 'top', 'crdm_catch_trial': 0},
      {'item': 6, 'crdm_sure_amt': 5, 'crdm_sure_p': 100, 'crdm_lott_top': 0, 'crdm_lott_bot': 5, 'crdm_lott_p': 25, 'crdm_amb_lev': 0, 'crdm_domain': 'gain', 'crdm_img': 'risk_blue_25.bmp', 'crdm_win_side': 'bottom', 'crdm_catch_trial': 1}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
    Routine crdm_trial
    Routine crdm_feedback
    Routine crdm_conf
    Routine crdm_trials_iti
  LoopTerminator crdm_trials
  Routine BPET_end
  Routine crdm_end
  Routine crdm_bonus
